<?xml version='1.0' encoding='UTF-8'?>
<model name="quadratic_heart_ArgusUNPUBLISHED_v01" xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cellml="http://www.cellml.org/cellml/1.1#">
    <component name="quadratic_heart_ArgusUNPUBLISHED_v01">
        <variable name="t" public_interface="in" units="second"/>
        <variable name="w0" public_interface="in" units="dimensionless"/>
        <variable name="k" public_interface="in" units="dimensionless"/>
        <variable name="E_min" public_interface="in" units="dimensionless"/>
        <variable name="E_max" public_interface="in" units="dimensionless"/>
        <variable name="V0" public_interface="in" units="dimensionless"/>
        <variable name="C_a" public_interface="in" units="dimensionless"/>
        <variable name="V_a0" public_interface="in" units="dimensionless"/>
        <variable name="C_v" public_interface="in" units="dimensionless"/>
        <variable name="V_v0" public_interface="in" units="dimensionless"/>
        <variable name="R_in" public_interface="in" units="dimensionless"/>
        <variable name="R_out" public_interface="in" units="dimensionless"/>
        <variable name="R_s" public_interface="in" units="dimensionless"/>
        <variable name="P_ref" public_interface="in" units="dimensionless"/>
        <variable name="u" public_interface="in" units="dimensionless"/>
        <variable name="V_lv_init" public_interface="in" units="dimensionless"/>
        <variable name="V_a_init" public_interface="in" units="dimensionless"/>
        <variable name="V_v_init" public_interface="in" units="dimensionless"/>
        <variable name="c_init" public_interface="in" units="dimensionless"/>
        <variable name="s_init" public_interface="in" units="dimensionless"/>
        <variable name="P_lv" public_interface="out" units="dimensionless"/>
        <variable name="P_a" public_interface="out" units="dimensionless"/>
        <variable name="P_v" public_interface="out" units="dimensionless"/>
        <variable initial_value="V_lv_init" name="V_lv" public_interface="out" units="dimensionless"/>
        <variable initial_value="V_a_init" name="V_a" public_interface="out" units="dimensionless"/>
        <variable initial_value="V_v_init" name="V_v" public_interface="out" units="dimensionless"/>
        <variable initial_value="c_init" name="c" public_interface="out" units="dimensionless"/>
        <variable initial_value="s_init" name="s" public_interface="out" units="dimensionless"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply><eq/><ci>P_lv</ci><apply><times/><apply><plus/><ci>E_min</ci><apply><divide/><apply><times/><cn cellml:units="dimensionless">1</cn><apply><plus/><cn cellml:units="dimensionless">1</cn><apply><times/><cn cellml:units="dimensionless">-1</cn><ci>c</ci></apply></apply><apply><plus/><ci>E_max</ci><apply><times/><cn cellml:units="dimensionless">-1</cn><ci>E_min</ci></apply></apply></apply><cn cellml:units="dimensionless">2</cn></apply></apply><apply><plus/><ci>V_lv</ci><apply><times/><cn cellml:units="dimensionless">-1</cn><ci>V0</ci></apply></apply></apply></apply>
            <apply><eq/><ci>P_a</ci><apply><divide/><apply><plus/><ci>V_a</ci><apply><times/><cn cellml:units="dimensionless">-1</cn><ci>V_a0</ci></apply></apply><ci>C_a</ci></apply></apply>
            <apply><eq/><ci>P_v</ci><apply><divide/><apply><plus/><ci>V_v</ci><apply><times/><cn cellml:units="dimensionless">-1</cn><ci>V_v0</ci></apply></apply><ci>C_v</ci></apply></apply>
            <apply><eq/><apply><diff/><bvar><ci>t</ci></bvar><ci>V_lv</ci></apply><apply><plus/><apply><divide/><apply><plus/><apply><divide/><apply><plus/><ci>V_v</ci><apply><times/><cn cellml:units="dimensionless">-1</cn><ci>V_v0</ci></apply></apply><ci>C_v</ci></apply><apply><times/><cn cellml:units="dimensionless">-1</cn><apply><plus/><ci>E_min</ci><apply><divide/><apply><times/><cn cellml:units="dimensionless">1</cn><apply><plus/><cn cellml:units="dimensionless">1</cn><apply><times/><cn cellml:units="dimensionless">-1</cn><ci>c</ci></apply></apply><apply><plus/><ci>E_max</ci><apply><times/><cn cellml:units="dimensionless">-1</cn><ci>E_min</ci></apply></apply></apply><cn cellml:units="dimensionless">2</cn></apply></apply><apply><plus/><ci>V_lv</ci><apply><times/><cn cellml:units="dimensionless">-1</cn><ci>V0</ci></apply></apply></apply></apply><ci>R_in</ci></apply><apply><divide/><apply><times/><cn cellml:units="dimensionless">-1</cn><apply><plus/><apply><times/><apply><plus/><ci>E_min</ci><apply><divide/><apply><times/><cn cellml:units="dimensionless">1</cn><apply><plus/><cn cellml:units="dimensionless">1</cn><apply><times/><cn cellml:units="dimensionless">-1</cn><ci>c</ci></apply></apply><apply><plus/><ci>E_max</ci><apply><times/><cn cellml:units="dimensionless">-1</cn><ci>E_min</ci></apply></apply></apply><cn cellml:units="dimensionless">2</cn></apply></apply><apply><plus/><ci>V_lv</ci><apply><times/><cn cellml:units="dimensionless">-1</cn><ci>V0</ci></apply></apply></apply><apply><divide/><apply><times/><cn cellml:units="dimensionless">-1</cn><apply><plus/><ci>V_a</ci><apply><times/><cn cellml:units="dimensionless">-1</cn><ci>V_a0</ci></apply></apply></apply><ci>C_a</ci></apply></apply></apply><ci>R_out</ci></apply></apply></apply>
            <apply><eq/><apply><diff/><bvar><ci>t</ci></bvar><ci>V_a</ci></apply><apply><plus/><apply><divide/><apply><plus/><apply><times/><apply><plus/><ci>E_min</ci><apply><divide/><apply><times/><cn cellml:units="dimensionless">1</cn><apply><plus/><cn cellml:units="dimensionless">1</cn><apply><times/><cn cellml:units="dimensionless">-1</cn><ci>c</ci></apply></apply><apply><plus/><ci>E_max</ci><apply><times/><cn cellml:units="dimensionless">-1</cn><ci>E_min</ci></apply></apply></apply><cn cellml:units="dimensionless">2</cn></apply></apply><apply><plus/><ci>V_lv</ci><apply><times/><cn cellml:units="dimensionless">-1</cn><ci>V0</ci></apply></apply></apply><apply><divide/><apply><times/><cn cellml:units="dimensionless">-1</cn><apply><plus/><ci>V_a</ci><apply><times/><cn cellml:units="dimensionless">-1</cn><ci>V_a0</ci></apply></apply></apply><ci>C_a</ci></apply></apply><ci>R_out</ci></apply><apply><divide/><apply><times/><cn cellml:units="dimensionless">-1</cn><apply><plus/><cn cellml:units="dimensionless">1</cn><ci>u</ci></apply><apply><plus/><apply><divide/><apply><plus/><ci>V_a</ci><apply><times/><cn cellml:units="dimensionless">-1</cn><ci>V_a0</ci></apply></apply><ci>C_a</ci></apply><apply><divide/><apply><times/><cn cellml:units="dimensionless">-1</cn><apply><plus/><ci>V_v</ci><apply><times/><cn cellml:units="dimensionless">-1</cn><ci>V_v0</ci></apply></apply></apply><ci>C_v</ci></apply></apply></apply><ci>R_s</ci></apply></apply></apply>
            <apply><eq/><apply><diff/><bvar><ci>t</ci></bvar><ci>V_v</ci></apply><apply><plus/><apply><divide/><apply><times/><cn cellml:units="dimensionless">-1</cn><apply><plus/><apply><divide/><apply><plus/><ci>V_v</ci><apply><times/><cn cellml:units="dimensionless">-1</cn><ci>V_v0</ci></apply></apply><ci>C_v</ci></apply><apply><times/><cn cellml:units="dimensionless">-1</cn><apply><plus/><ci>E_min</ci><apply><divide/><apply><times/><cn cellml:units="dimensionless">1</cn><apply><plus/><cn cellml:units="dimensionless">1</cn><apply><times/><cn cellml:units="dimensionless">-1</cn><ci>c</ci></apply></apply><apply><plus/><ci>E_max</ci><apply><times/><cn cellml:units="dimensionless">-1</cn><ci>E_min</ci></apply></apply></apply><cn cellml:units="dimensionless">2</cn></apply></apply><apply><plus/><ci>V_lv</ci><apply><times/><cn cellml:units="dimensionless">-1</cn><ci>V0</ci></apply></apply></apply></apply></apply><ci>R_in</ci></apply><apply><divide/><apply><times/><apply><plus/><cn cellml:units="dimensionless">1</cn><ci>u</ci></apply><apply><plus/><apply><divide/><apply><plus/><ci>V_a</ci><apply><times/><cn cellml:units="dimensionless">-1</cn><ci>V_a0</ci></apply></apply><ci>C_a</ci></apply><apply><divide/><apply><times/><cn cellml:units="dimensionless">-1</cn><apply><plus/><ci>V_v</ci><apply><times/><cn cellml:units="dimensionless">-1</cn><ci>V_v0</ci></apply></apply></apply><ci>C_v</ci></apply></apply></apply><ci>R_s</ci></apply></apply></apply>
            <apply><eq/><apply><diff/><bvar><ci>t</ci></bvar><ci>c</ci></apply><apply><times/><cn cellml:units="dimensionless">-1</cn><ci>s</ci><ci>w0</ci><apply><plus/><cn cellml:units="dimensionless">1</cn><apply><divide/><apply><times/><ci>k</ci><apply><plus/><apply><times/><cn cellml:units="dimensionless">-1</cn><ci>P_ref</ci></apply><apply><divide/><apply><plus/><ci>V_a</ci><apply><times/><cn cellml:units="dimensionless">-1</cn><ci>V_a0</ci></apply></apply><ci>C_a</ci></apply></apply></apply><ci>P_ref</ci></apply></apply></apply></apply>
            <apply><eq/><apply><diff/><bvar><ci>t</ci></bvar><ci>s</ci></apply><apply><times/><ci>c</ci><ci>w0</ci><apply><plus/><cn cellml:units="dimensionless">1</cn><apply><divide/><apply><times/><ci>k</ci><apply><plus/><apply><times/><cn cellml:units="dimensionless">-1</cn><ci>P_ref</ci></apply><apply><divide/><apply><plus/><ci>V_a</ci><apply><times/><cn cellml:units="dimensionless">-1</cn><ci>V_a0</ci></apply></apply><ci>C_a</ci></apply></apply></apply><ci>P_ref</ci></apply></apply></apply></apply>
        </math>
    </component>
</model>
