def model tubular_reactor_N51_Kramer2019_v01 as

  def comp tubular_reactor_N51_Kramer2019_v01 as
    var t: second {pub: in};
    var Pe: dimensionless {pub: in};
    var gamma: dimensionless {pub: in};
    var B: dimensionless {pub: in};
    var beta: dimensionless {pub: in};
    var D: dimensionless {pub: in};
    var theta_in: dimensionless {pub: in};
    var psi_in: dimensionless {pub: in};
    var psi_1_init: dimensionless {pub: in};
    var psi_2_init: dimensionless {pub: in};
    var psi_3_init: dimensionless {pub: in};
    var psi_4_init: dimensionless {pub: in};
    var psi_5_init: dimensionless {pub: in};
    var psi_6_init: dimensionless {pub: in};
    var psi_7_init: dimensionless {pub: in};
    var psi_8_init: dimensionless {pub: in};
    var psi_9_init: dimensionless {pub: in};
    var psi_10_init: dimensionless {pub: in};
    var psi_11_init: dimensionless {pub: in};
    var psi_12_init: dimensionless {pub: in};
    var psi_13_init: dimensionless {pub: in};
    var psi_14_init: dimensionless {pub: in};
    var psi_15_init: dimensionless {pub: in};
    var psi_16_init: dimensionless {pub: in};
    var psi_17_init: dimensionless {pub: in};
    var psi_18_init: dimensionless {pub: in};
    var psi_19_init: dimensionless {pub: in};
    var psi_20_init: dimensionless {pub: in};
    var psi_21_init: dimensionless {pub: in};
    var psi_22_init: dimensionless {pub: in};
    var psi_23_init: dimensionless {pub: in};
    var psi_24_init: dimensionless {pub: in};
    var psi_25_init: dimensionless {pub: in};
    var psi_26_init: dimensionless {pub: in};
    var psi_27_init: dimensionless {pub: in};
    var psi_28_init: dimensionless {pub: in};
    var psi_29_init: dimensionless {pub: in};
    var psi_30_init: dimensionless {pub: in};
    var psi_31_init: dimensionless {pub: in};
    var psi_32_init: dimensionless {pub: in};
    var psi_33_init: dimensionless {pub: in};
    var psi_34_init: dimensionless {pub: in};
    var psi_35_init: dimensionless {pub: in};
    var psi_36_init: dimensionless {pub: in};
    var psi_37_init: dimensionless {pub: in};
    var psi_38_init: dimensionless {pub: in};
    var psi_39_init: dimensionless {pub: in};
    var psi_40_init: dimensionless {pub: in};
    var psi_41_init: dimensionless {pub: in};
    var psi_42_init: dimensionless {pub: in};
    var psi_43_init: dimensionless {pub: in};
    var psi_44_init: dimensionless {pub: in};
    var psi_45_init: dimensionless {pub: in};
    var psi_46_init: dimensionless {pub: in};
    var psi_47_init: dimensionless {pub: in};
    var psi_48_init: dimensionless {pub: in};
    var psi_49_init: dimensionless {pub: in};
    var psi_50_init: dimensionless {pub: in};
    var psi_51_init: dimensionless {pub: in};
    var theta_1_init: dimensionless {pub: in};
    var theta_2_init: dimensionless {pub: in};
    var theta_3_init: dimensionless {pub: in};
    var theta_4_init: dimensionless {pub: in};
    var theta_5_init: dimensionless {pub: in};
    var theta_6_init: dimensionless {pub: in};
    var theta_7_init: dimensionless {pub: in};
    var theta_8_init: dimensionless {pub: in};
    var theta_9_init: dimensionless {pub: in};
    var theta_10_init: dimensionless {pub: in};
    var theta_11_init: dimensionless {pub: in};
    var theta_12_init: dimensionless {pub: in};
    var theta_13_init: dimensionless {pub: in};
    var theta_14_init: dimensionless {pub: in};
    var theta_15_init: dimensionless {pub: in};
    var theta_16_init: dimensionless {pub: in};
    var theta_17_init: dimensionless {pub: in};
    var theta_18_init: dimensionless {pub: in};
    var theta_19_init: dimensionless {pub: in};
    var theta_20_init: dimensionless {pub: in};
    var theta_21_init: dimensionless {pub: in};
    var theta_22_init: dimensionless {pub: in};
    var theta_23_init: dimensionless {pub: in};
    var theta_24_init: dimensionless {pub: in};
    var theta_25_init: dimensionless {pub: in};
    var theta_26_init: dimensionless {pub: in};
    var theta_27_init: dimensionless {pub: in};
    var theta_28_init: dimensionless {pub: in};
    var theta_29_init: dimensionless {pub: in};
    var theta_30_init: dimensionless {pub: in};
    var theta_31_init: dimensionless {pub: in};
    var theta_32_init: dimensionless {pub: in};
    var theta_33_init: dimensionless {pub: in};
    var theta_34_init: dimensionless {pub: in};
    var theta_35_init: dimensionless {pub: in};
    var theta_36_init: dimensionless {pub: in};
    var theta_37_init: dimensionless {pub: in};
    var theta_38_init: dimensionless {pub: in};
    var theta_39_init: dimensionless {pub: in};
    var theta_40_init: dimensionless {pub: in};
    var theta_41_init: dimensionless {pub: in};
    var theta_42_init: dimensionless {pub: in};
    var theta_43_init: dimensionless {pub: in};
    var theta_44_init: dimensionless {pub: in};
    var theta_45_init: dimensionless {pub: in};
    var theta_46_init: dimensionless {pub: in};
    var theta_47_init: dimensionless {pub: in};
    var theta_48_init: dimensionless {pub: in};
    var theta_49_init: dimensionless {pub: in};
    var theta_50_init: dimensionless {pub: in};
    var theta_51_init: dimensionless {pub: in};
    var psi_1: dimensionless {init: psi_1_init, pub: out};
    var psi_2: dimensionless {init: psi_2_init, pub: out};
    var psi_3: dimensionless {init: psi_3_init, pub: out};
    var psi_4: dimensionless {init: psi_4_init, pub: out};
    var psi_5: dimensionless {init: psi_5_init, pub: out};
    var psi_6: dimensionless {init: psi_6_init, pub: out};
    var psi_7: dimensionless {init: psi_7_init, pub: out};
    var psi_8: dimensionless {init: psi_8_init, pub: out};
    var psi_9: dimensionless {init: psi_9_init, pub: out};
    var psi_10: dimensionless {init: psi_10_init, pub: out};
    var psi_11: dimensionless {init: psi_11_init, pub: out};
    var psi_12: dimensionless {init: psi_12_init, pub: out};
    var psi_13: dimensionless {init: psi_13_init, pub: out};
    var psi_14: dimensionless {init: psi_14_init, pub: out};
    var psi_15: dimensionless {init: psi_15_init, pub: out};
    var psi_16: dimensionless {init: psi_16_init, pub: out};
    var psi_17: dimensionless {init: psi_17_init, pub: out};
    var psi_18: dimensionless {init: psi_18_init, pub: out};
    var psi_19: dimensionless {init: psi_19_init, pub: out};
    var psi_20: dimensionless {init: psi_20_init, pub: out};
    var psi_21: dimensionless {init: psi_21_init, pub: out};
    var psi_22: dimensionless {init: psi_22_init, pub: out};
    var psi_23: dimensionless {init: psi_23_init, pub: out};
    var psi_24: dimensionless {init: psi_24_init, pub: out};
    var psi_25: dimensionless {init: psi_25_init, pub: out};
    var psi_26: dimensionless {init: psi_26_init, pub: out};
    var psi_27: dimensionless {init: psi_27_init, pub: out};
    var psi_28: dimensionless {init: psi_28_init, pub: out};
    var psi_29: dimensionless {init: psi_29_init, pub: out};
    var psi_30: dimensionless {init: psi_30_init, pub: out};
    var psi_31: dimensionless {init: psi_31_init, pub: out};
    var psi_32: dimensionless {init: psi_32_init, pub: out};
    var psi_33: dimensionless {init: psi_33_init, pub: out};
    var psi_34: dimensionless {init: psi_34_init, pub: out};
    var psi_35: dimensionless {init: psi_35_init, pub: out};
    var psi_36: dimensionless {init: psi_36_init, pub: out};
    var psi_37: dimensionless {init: psi_37_init, pub: out};
    var psi_38: dimensionless {init: psi_38_init, pub: out};
    var psi_39: dimensionless {init: psi_39_init, pub: out};
    var psi_40: dimensionless {init: psi_40_init, pub: out};
    var psi_41: dimensionless {init: psi_41_init, pub: out};
    var psi_42: dimensionless {init: psi_42_init, pub: out};
    var psi_43: dimensionless {init: psi_43_init, pub: out};
    var psi_44: dimensionless {init: psi_44_init, pub: out};
    var psi_45: dimensionless {init: psi_45_init, pub: out};
    var psi_46: dimensionless {init: psi_46_init, pub: out};
    var psi_47: dimensionless {init: psi_47_init, pub: out};
    var psi_48: dimensionless {init: psi_48_init, pub: out};
    var psi_49: dimensionless {init: psi_49_init, pub: out};
    var psi_50: dimensionless {init: psi_50_init, pub: out};
    var psi_51: dimensionless {init: psi_51_init, pub: out};
    var theta_1: dimensionless {init: theta_1_init, pub: out};
    var theta_2: dimensionless {init: theta_2_init, pub: out};
    var theta_3: dimensionless {init: theta_3_init, pub: out};
    var theta_4: dimensionless {init: theta_4_init, pub: out};
    var theta_5: dimensionless {init: theta_5_init, pub: out};
    var theta_6: dimensionless {init: theta_6_init, pub: out};
    var theta_7: dimensionless {init: theta_7_init, pub: out};
    var theta_8: dimensionless {init: theta_8_init, pub: out};
    var theta_9: dimensionless {init: theta_9_init, pub: out};
    var theta_10: dimensionless {init: theta_10_init, pub: out};
    var theta_11: dimensionless {init: theta_11_init, pub: out};
    var theta_12: dimensionless {init: theta_12_init, pub: out};
    var theta_13: dimensionless {init: theta_13_init, pub: out};
    var theta_14: dimensionless {init: theta_14_init, pub: out};
    var theta_15: dimensionless {init: theta_15_init, pub: out};
    var theta_16: dimensionless {init: theta_16_init, pub: out};
    var theta_17: dimensionless {init: theta_17_init, pub: out};
    var theta_18: dimensionless {init: theta_18_init, pub: out};
    var theta_19: dimensionless {init: theta_19_init, pub: out};
    var theta_20: dimensionless {init: theta_20_init, pub: out};
    var theta_21: dimensionless {init: theta_21_init, pub: out};
    var theta_22: dimensionless {init: theta_22_init, pub: out};
    var theta_23: dimensionless {init: theta_23_init, pub: out};
    var theta_24: dimensionless {init: theta_24_init, pub: out};
    var theta_25: dimensionless {init: theta_25_init, pub: out};
    var theta_26: dimensionless {init: theta_26_init, pub: out};
    var theta_27: dimensionless {init: theta_27_init, pub: out};
    var theta_28: dimensionless {init: theta_28_init, pub: out};
    var theta_29: dimensionless {init: theta_29_init, pub: out};
    var theta_30: dimensionless {init: theta_30_init, pub: out};
    var theta_31: dimensionless {init: theta_31_init, pub: out};
    var theta_32: dimensionless {init: theta_32_init, pub: out};
    var theta_33: dimensionless {init: theta_33_init, pub: out};
    var theta_34: dimensionless {init: theta_34_init, pub: out};
    var theta_35: dimensionless {init: theta_35_init, pub: out};
    var theta_36: dimensionless {init: theta_36_init, pub: out};
    var theta_37: dimensionless {init: theta_37_init, pub: out};
    var theta_38: dimensionless {init: theta_38_init, pub: out};
    var theta_39: dimensionless {init: theta_39_init, pub: out};
    var theta_40: dimensionless {init: theta_40_init, pub: out};
    var theta_41: dimensionless {init: theta_41_init, pub: out};
    var theta_42: dimensionless {init: theta_42_init, pub: out};
    var theta_43: dimensionless {init: theta_43_init, pub: out};
    var theta_44: dimensionless {init: theta_44_init, pub: out};
    var theta_45: dimensionless {init: theta_45_init, pub: out};
    var theta_46: dimensionless {init: theta_46_init, pub: out};
    var theta_47: dimensionless {init: theta_47_init, pub: out};
    var theta_48: dimensionless {init: theta_48_init, pub: out};
    var theta_49: dimensionless {init: theta_49_init, pub: out};
    var theta_50: dimensionless {init: theta_50_init, pub: out};
    var theta_51: dimensionless {init: theta_51_init, pub: out};
    ode(psi_1, t) = (-5000{dimensionless}*psi_1+5000{dimensionless}*psi_2+(-100{dimensionless}*Pe*(psi_1+(-1{dimensionless}*psi_in))))/Pe+(-1{dimensionless}*Pe*(psi_1+(-1{dimensionless}*psi_in)))+(-1{dimensionless}*D*psi_1*exp(gamma+(-1{dimensionless}*gamma/theta_1)));
    ode(psi_2, t) = -25{dimensionless}*psi_3+25{dimensionless}*psi_1+(-5000{dimensionless}*psi_2+2500{dimensionless}*psi_1+2500{dimensionless}*psi_3)/Pe+(-1{dimensionless}*D*psi_2*exp(gamma+(-1{dimensionless}*gamma/theta_2)));
    ode(psi_3, t) = -25{dimensionless}*psi_4+25{dimensionless}*psi_2+(-5000{dimensionless}*psi_3+2500{dimensionless}*psi_2+2500{dimensionless}*psi_4)/Pe+(-1{dimensionless}*D*psi_3*exp(gamma+(-1{dimensionless}*gamma/theta_3)));
    ode(psi_4, t) = -25{dimensionless}*psi_5+25{dimensionless}*psi_3+(-5000{dimensionless}*psi_4+2500{dimensionless}*psi_3+2500{dimensionless}*psi_5)/Pe+(-1{dimensionless}*D*psi_4*exp(gamma+(-1{dimensionless}*gamma/theta_4)));
    ode(psi_5, t) = -25{dimensionless}*psi_6+25{dimensionless}*psi_4+(-5000{dimensionless}*psi_5+2500{dimensionless}*psi_4+2500{dimensionless}*psi_6)/Pe+(-1{dimensionless}*D*psi_5*exp(gamma+(-1{dimensionless}*gamma/theta_5)));
    ode(psi_6, t) = -25{dimensionless}*psi_7+25{dimensionless}*psi_5+(-5000{dimensionless}*psi_6+2500{dimensionless}*psi_5+2500{dimensionless}*psi_7)/Pe+(-1{dimensionless}*D*psi_6*exp(gamma+(-1{dimensionless}*gamma/theta_6)));
    ode(psi_7, t) = -25{dimensionless}*psi_8+25{dimensionless}*psi_6+(-5000{dimensionless}*psi_7+2500{dimensionless}*psi_6+2500{dimensionless}*psi_8)/Pe+(-1{dimensionless}*D*psi_7*exp(gamma+(-1{dimensionless}*gamma/theta_7)));
    ode(psi_8, t) = -25{dimensionless}*psi_9+25{dimensionless}*psi_7+(-5000{dimensionless}*psi_8+2500{dimensionless}*psi_7+2500{dimensionless}*psi_9)/Pe+(-1{dimensionless}*D*psi_8*exp(gamma+(-1{dimensionless}*gamma/theta_8)));
    ode(psi_9, t) = -25{dimensionless}*psi_10+25{dimensionless}*psi_8+(-5000{dimensionless}*psi_9+2500{dimensionless}*psi_10+2500{dimensionless}*psi_8)/Pe+(-1{dimensionless}*D*psi_9*exp(gamma+(-1{dimensionless}*gamma/theta_9)));
    ode(psi_10, t) = -25{dimensionless}*psi_11+25{dimensionless}*psi_9+(-5000{dimensionless}*psi_10+2500{dimensionless}*psi_11+2500{dimensionless}*psi_9)/Pe+(-1{dimensionless}*D*psi_10*exp(gamma+(-1{dimensionless}*gamma/theta_10)));
    ode(psi_11, t) = -25{dimensionless}*psi_12+25{dimensionless}*psi_10+(-5000{dimensionless}*psi_11+2500{dimensionless}*psi_10+2500{dimensionless}*psi_12)/Pe+(-1{dimensionless}*D*psi_11*exp(gamma+(-1{dimensionless}*gamma/theta_11)));
    ode(psi_12, t) = -25{dimensionless}*psi_13+25{dimensionless}*psi_11+(-5000{dimensionless}*psi_12+2500{dimensionless}*psi_11+2500{dimensionless}*psi_13)/Pe+(-1{dimensionless}*D*psi_12*exp(gamma+(-1{dimensionless}*gamma/theta_12)));
    ode(psi_13, t) = -25{dimensionless}*psi_14+25{dimensionless}*psi_12+(-5000{dimensionless}*psi_13+2500{dimensionless}*psi_12+2500{dimensionless}*psi_14)/Pe+(-1{dimensionless}*D*psi_13*exp(gamma+(-1{dimensionless}*gamma/theta_13)));
    ode(psi_14, t) = -25{dimensionless}*psi_15+25{dimensionless}*psi_13+(-5000{dimensionless}*psi_14+2500{dimensionless}*psi_13+2500{dimensionless}*psi_15)/Pe+(-1{dimensionless}*D*psi_14*exp(gamma+(-1{dimensionless}*gamma/theta_14)));
    ode(psi_15, t) = -25{dimensionless}*psi_16+25{dimensionless}*psi_14+(-5000{dimensionless}*psi_15+2500{dimensionless}*psi_14+2500{dimensionless}*psi_16)/Pe+(-1{dimensionless}*D*psi_15*exp(gamma+(-1{dimensionless}*gamma/theta_15)));
    ode(psi_16, t) = -25{dimensionless}*psi_17+25{dimensionless}*psi_15+(-5000{dimensionless}*psi_16+2500{dimensionless}*psi_15+2500{dimensionless}*psi_17)/Pe+(-1{dimensionless}*D*psi_16*exp(gamma+(-1{dimensionless}*gamma/theta_16)));
    ode(psi_17, t) = -25{dimensionless}*psi_18+25{dimensionless}*psi_16+(-5000{dimensionless}*psi_17+2500{dimensionless}*psi_16+2500{dimensionless}*psi_18)/Pe+(-1{dimensionless}*D*psi_17*exp(gamma+(-1{dimensionless}*gamma/theta_17)));
    ode(psi_18, t) = -25{dimensionless}*psi_19+25{dimensionless}*psi_17+(-5000{dimensionless}*psi_18+2500{dimensionless}*psi_17+2500{dimensionless}*psi_19)/Pe+(-1{dimensionless}*D*psi_18*exp(gamma+(-1{dimensionless}*gamma/theta_18)));
    ode(psi_19, t) = -25{dimensionless}*psi_20+25{dimensionless}*psi_18+(-5000{dimensionless}*psi_19+2500{dimensionless}*psi_18+2500{dimensionless}*psi_20)/Pe+(-1{dimensionless}*D*psi_19*exp(gamma+(-1{dimensionless}*gamma/theta_19)));
    ode(psi_20, t) = -25{dimensionless}*psi_21+25{dimensionless}*psi_19+(-5000{dimensionless}*psi_20+2500{dimensionless}*psi_19+2500{dimensionless}*psi_21)/Pe+(-1{dimensionless}*D*psi_20*exp(gamma+(-1{dimensionless}*gamma/theta_20)));
    ode(psi_21, t) = -25{dimensionless}*psi_22+25{dimensionless}*psi_20+(-5000{dimensionless}*psi_21+2500{dimensionless}*psi_20+2500{dimensionless}*psi_22)/Pe+(-1{dimensionless}*D*psi_21*exp(gamma+(-1{dimensionless}*gamma/theta_21)));
    ode(psi_22, t) = -25{dimensionless}*psi_23+25{dimensionless}*psi_21+(-5000{dimensionless}*psi_22+2500{dimensionless}*psi_21+2500{dimensionless}*psi_23)/Pe+(-1{dimensionless}*D*psi_22*exp(gamma+(-1{dimensionless}*gamma/theta_22)));
    ode(psi_23, t) = -25{dimensionless}*psi_24+25{dimensionless}*psi_22+(-5000{dimensionless}*psi_23+2500{dimensionless}*psi_22+2500{dimensionless}*psi_24)/Pe+(-1{dimensionless}*D*psi_23*exp(gamma+(-1{dimensionless}*gamma/theta_23)));
    ode(psi_24, t) = -25{dimensionless}*psi_25+25{dimensionless}*psi_23+(-5000{dimensionless}*psi_24+2500{dimensionless}*psi_23+2500{dimensionless}*psi_25)/Pe+(-1{dimensionless}*D*psi_24*exp(gamma+(-1{dimensionless}*gamma/theta_24)));
    ode(psi_25, t) = -25{dimensionless}*psi_26+25{dimensionless}*psi_24+(-5000{dimensionless}*psi_25+2500{dimensionless}*psi_24+2500{dimensionless}*psi_26)/Pe+(-1{dimensionless}*D*psi_25*exp(gamma+(-1{dimensionless}*gamma/theta_25)));
    ode(psi_26, t) = -25{dimensionless}*psi_27+25{dimensionless}*psi_25+(-5000{dimensionless}*psi_26+2500{dimensionless}*psi_25+2500{dimensionless}*psi_27)/Pe+(-1{dimensionless}*D*psi_26*exp(gamma+(-1{dimensionless}*gamma/theta_26)));
    ode(psi_27, t) = -25{dimensionless}*psi_28+25{dimensionless}*psi_26+(-5000{dimensionless}*psi_27+2500{dimensionless}*psi_26+2500{dimensionless}*psi_28)/Pe+(-1{dimensionless}*D*psi_27*exp(gamma+(-1{dimensionless}*gamma/theta_27)));
    ode(psi_28, t) = -25{dimensionless}*psi_29+25{dimensionless}*psi_27+(-5000{dimensionless}*psi_28+2500{dimensionless}*psi_27+2500{dimensionless}*psi_29)/Pe+(-1{dimensionless}*D*psi_28*exp(gamma+(-1{dimensionless}*gamma/theta_28)));
    ode(psi_29, t) = -25{dimensionless}*psi_30+25{dimensionless}*psi_28+(-5000{dimensionless}*psi_29+2500{dimensionless}*psi_28+2500{dimensionless}*psi_30)/Pe+(-1{dimensionless}*D*psi_29*exp(gamma+(-1{dimensionless}*gamma/theta_29)));
    ode(psi_30, t) = -25{dimensionless}*psi_31+25{dimensionless}*psi_29+(-5000{dimensionless}*psi_30+2500{dimensionless}*psi_29+2500{dimensionless}*psi_31)/Pe+(-1{dimensionless}*D*psi_30*exp(gamma+(-1{dimensionless}*gamma/theta_30)));
    ode(psi_31, t) = -25{dimensionless}*psi_32+25{dimensionless}*psi_30+(-5000{dimensionless}*psi_31+2500{dimensionless}*psi_30+2500{dimensionless}*psi_32)/Pe+(-1{dimensionless}*D*psi_31*exp(gamma+(-1{dimensionless}*gamma/theta_31)));
    ode(psi_32, t) = -25{dimensionless}*psi_33+25{dimensionless}*psi_31+(-5000{dimensionless}*psi_32+2500{dimensionless}*psi_31+2500{dimensionless}*psi_33)/Pe+(-1{dimensionless}*D*psi_32*exp(gamma+(-1{dimensionless}*gamma/theta_32)));
    ode(psi_33, t) = -25{dimensionless}*psi_34+25{dimensionless}*psi_32+(-5000{dimensionless}*psi_33+2500{dimensionless}*psi_32+2500{dimensionless}*psi_34)/Pe+(-1{dimensionless}*D*psi_33*exp(gamma+(-1{dimensionless}*gamma/theta_33)));
    ode(psi_34, t) = -25{dimensionless}*psi_35+25{dimensionless}*psi_33+(-5000{dimensionless}*psi_34+2500{dimensionless}*psi_33+2500{dimensionless}*psi_35)/Pe+(-1{dimensionless}*D*psi_34*exp(gamma+(-1{dimensionless}*gamma/theta_34)));
    ode(psi_35, t) = -25{dimensionless}*psi_36+25{dimensionless}*psi_34+(-5000{dimensionless}*psi_35+2500{dimensionless}*psi_34+2500{dimensionless}*psi_36)/Pe+(-1{dimensionless}*D*psi_35*exp(gamma+(-1{dimensionless}*gamma/theta_35)));
    ode(psi_36, t) = -25{dimensionless}*psi_37+25{dimensionless}*psi_35+(-5000{dimensionless}*psi_36+2500{dimensionless}*psi_35+2500{dimensionless}*psi_37)/Pe+(-1{dimensionless}*D*psi_36*exp(gamma+(-1{dimensionless}*gamma/theta_36)));
    ode(psi_37, t) = -25{dimensionless}*psi_38+25{dimensionless}*psi_36+(-5000{dimensionless}*psi_37+2500{dimensionless}*psi_36+2500{dimensionless}*psi_38)/Pe+(-1{dimensionless}*D*psi_37*exp(gamma+(-1{dimensionless}*gamma/theta_37)));
    ode(psi_38, t) = -25{dimensionless}*psi_39+25{dimensionless}*psi_37+(-5000{dimensionless}*psi_38+2500{dimensionless}*psi_37+2500{dimensionless}*psi_39)/Pe+(-1{dimensionless}*D*psi_38*exp(gamma+(-1{dimensionless}*gamma/theta_38)));
    ode(psi_39, t) = -25{dimensionless}*psi_40+25{dimensionless}*psi_38+(-5000{dimensionless}*psi_39+2500{dimensionless}*psi_38+2500{dimensionless}*psi_40)/Pe+(-1{dimensionless}*D*psi_39*exp(gamma+(-1{dimensionless}*gamma/theta_39)));
    ode(psi_40, t) = -25{dimensionless}*psi_41+25{dimensionless}*psi_39+(-5000{dimensionless}*psi_40+2500{dimensionless}*psi_39+2500{dimensionless}*psi_41)/Pe+(-1{dimensionless}*D*psi_40*exp(gamma+(-1{dimensionless}*gamma/theta_40)));
    ode(psi_41, t) = -25{dimensionless}*psi_42+25{dimensionless}*psi_40+(-5000{dimensionless}*psi_41+2500{dimensionless}*psi_40+2500{dimensionless}*psi_42)/Pe+(-1{dimensionless}*D*psi_41*exp(gamma+(-1{dimensionless}*gamma/theta_41)));
    ode(psi_42, t) = -25{dimensionless}*psi_43+25{dimensionless}*psi_41+(-5000{dimensionless}*psi_42+2500{dimensionless}*psi_41+2500{dimensionless}*psi_43)/Pe+(-1{dimensionless}*D*psi_42*exp(gamma+(-1{dimensionless}*gamma/theta_42)));
    ode(psi_43, t) = -25{dimensionless}*psi_44+25{dimensionless}*psi_42+(-5000{dimensionless}*psi_43+2500{dimensionless}*psi_42+2500{dimensionless}*psi_44)/Pe+(-1{dimensionless}*D*psi_43*exp(gamma+(-1{dimensionless}*gamma/theta_43)));
    ode(psi_44, t) = -25{dimensionless}*psi_45+25{dimensionless}*psi_43+(-5000{dimensionless}*psi_44+2500{dimensionless}*psi_43+2500{dimensionless}*psi_45)/Pe+(-1{dimensionless}*D*psi_44*exp(gamma+(-1{dimensionless}*gamma/theta_44)));
    ode(psi_45, t) = -25{dimensionless}*psi_46+25{dimensionless}*psi_44+(-5000{dimensionless}*psi_45+2500{dimensionless}*psi_44+2500{dimensionless}*psi_46)/Pe+(-1{dimensionless}*D*psi_45*exp(gamma+(-1{dimensionless}*gamma/theta_45)));
    ode(psi_46, t) = -25{dimensionless}*psi_47+25{dimensionless}*psi_45+(-5000{dimensionless}*psi_46+2500{dimensionless}*psi_45+2500{dimensionless}*psi_47)/Pe+(-1{dimensionless}*D*psi_46*exp(gamma+(-1{dimensionless}*gamma/theta_46)));
    ode(psi_47, t) = -25{dimensionless}*psi_48+25{dimensionless}*psi_46+(-5000{dimensionless}*psi_47+2500{dimensionless}*psi_46+2500{dimensionless}*psi_48)/Pe+(-1{dimensionless}*D*psi_47*exp(gamma+(-1{dimensionless}*gamma/theta_47)));
    ode(psi_48, t) = -25{dimensionless}*psi_49+25{dimensionless}*psi_47+(-5000{dimensionless}*psi_48+2500{dimensionless}*psi_47+2500{dimensionless}*psi_49)/Pe+(-1{dimensionless}*D*psi_48*exp(gamma+(-1{dimensionless}*gamma/theta_48)));
    ode(psi_49, t) = -25{dimensionless}*psi_50+25{dimensionless}*psi_48+(-5000{dimensionless}*psi_49+2500{dimensionless}*psi_48+2500{dimensionless}*psi_50)/Pe+(-1{dimensionless}*D*psi_49*exp(gamma+(-1{dimensionless}*gamma/theta_49)));
    ode(psi_50, t) = -25{dimensionless}*psi_51+25{dimensionless}*psi_49+(-5000{dimensionless}*psi_50+2500{dimensionless}*psi_49+2500{dimensionless}*psi_51)/Pe+(-1{dimensionless}*D*psi_50*exp(gamma+(-1{dimensionless}*gamma/theta_50)));
    ode(psi_51, t) = (-5000{dimensionless}*psi_51+5000{dimensionless}*psi_50)/Pe+(-1{dimensionless}*D*psi_51*exp(gamma+(-1{dimensionless}*gamma/theta_51)));
    ode(theta_1, t) = (-5000{dimensionless}*theta_1+5000{dimensionless}*theta_2+(-100{dimensionless}*Pe*(theta_1+(-1{dimensionless}*theta_in))))/Pe+(-1{dimensionless}*Pe*(theta_1+(-1{dimensionless}*theta_in)))+(-1{dimensionless}*beta*(-1{dimensionless}+theta_1))+B*D*psi_1*exp(gamma+(-1{dimensionless}*gamma/theta_1));
    ode(theta_2, t) = -25{dimensionless}*theta_3+25{dimensionless}*theta_1+(-5000{dimensionless}*theta_2+2500{dimensionless}*theta_1+2500{dimensionless}*theta_3)/Pe+(-1{dimensionless}*beta*(-1{dimensionless}+theta_2))+B*D*psi_2*exp(gamma+(-1{dimensionless}*gamma/theta_2));
    ode(theta_3, t) = -25{dimensionless}*theta_4+25{dimensionless}*theta_2+(-5000{dimensionless}*theta_3+2500{dimensionless}*theta_2+2500{dimensionless}*theta_4)/Pe+(-1{dimensionless}*beta*(-1{dimensionless}+theta_3))+B*D*psi_3*exp(gamma+(-1{dimensionless}*gamma/theta_3));
    ode(theta_4, t) = -25{dimensionless}*theta_5+25{dimensionless}*theta_3+(-5000{dimensionless}*theta_4+2500{dimensionless}*theta_3+2500{dimensionless}*theta_5)/Pe+(-1{dimensionless}*beta*(-1{dimensionless}+theta_4))+B*D*psi_4*exp(gamma+(-1{dimensionless}*gamma/theta_4));
    ode(theta_5, t) = -25{dimensionless}*theta_6+25{dimensionless}*theta_4+(-5000{dimensionless}*theta_5+2500{dimensionless}*theta_4+2500{dimensionless}*theta_6)/Pe+(-1{dimensionless}*beta*(-1{dimensionless}+theta_5))+B*D*psi_5*exp(gamma+(-1{dimensionless}*gamma/theta_5));
    ode(theta_6, t) = -25{dimensionless}*theta_7+25{dimensionless}*theta_5+(-5000{dimensionless}*theta_6+2500{dimensionless}*theta_5+2500{dimensionless}*theta_7)/Pe+(-1{dimensionless}*beta*(-1{dimensionless}+theta_6))+B*D*psi_6*exp(gamma+(-1{dimensionless}*gamma/theta_6));
    ode(theta_7, t) = -25{dimensionless}*theta_8+25{dimensionless}*theta_6+(-5000{dimensionless}*theta_7+2500{dimensionless}*theta_6+2500{dimensionless}*theta_8)/Pe+(-1{dimensionless}*beta*(-1{dimensionless}+theta_7))+B*D*psi_7*exp(gamma+(-1{dimensionless}*gamma/theta_7));
    ode(theta_8, t) = -25{dimensionless}*theta_9+25{dimensionless}*theta_7+(-5000{dimensionless}*theta_8+2500{dimensionless}*theta_7+2500{dimensionless}*theta_9)/Pe+(-1{dimensionless}*beta*(-1{dimensionless}+theta_8))+B*D*psi_8*exp(gamma+(-1{dimensionless}*gamma/theta_8));
    ode(theta_9, t) = -25{dimensionless}*theta_10+25{dimensionless}*theta_8+(-5000{dimensionless}*theta_9+2500{dimensionless}*theta_10+2500{dimensionless}*theta_8)/Pe+(-1{dimensionless}*beta*(-1{dimensionless}+theta_9))+B*D*psi_9*exp(gamma+(-1{dimensionless}*gamma/theta_9));
    ode(theta_10, t) = -25{dimensionless}*theta_11+25{dimensionless}*theta_9+(-5000{dimensionless}*theta_10+2500{dimensionless}*theta_11+2500{dimensionless}*theta_9)/Pe+(-1{dimensionless}*beta*(-1{dimensionless}+theta_10))+B*D*psi_10*exp(gamma+(-1{dimensionless}*gamma/theta_10));
    ode(theta_11, t) = -25{dimensionless}*theta_12+25{dimensionless}*theta_10+(-5000{dimensionless}*theta_11+2500{dimensionless}*theta_10+2500{dimensionless}*theta_12)/Pe+(-1{dimensionless}*beta*(-1{dimensionless}+theta_11))+B*D*psi_11*exp(gamma+(-1{dimensionless}*gamma/theta_11));
    ode(theta_12, t) = -25{dimensionless}*theta_13+25{dimensionless}*theta_11+(-5000{dimensionless}*theta_12+2500{dimensionless}*theta_11+2500{dimensionless}*theta_13)/Pe+(-1{dimensionless}*beta*(-1{dimensionless}+theta_12))+B*D*psi_12*exp(gamma+(-1{dimensionless}*gamma/theta_12));
    ode(theta_13, t) = -25{dimensionless}*theta_14+25{dimensionless}*theta_12+(-5000{dimensionless}*theta_13+2500{dimensionless}*theta_12+2500{dimensionless}*theta_14)/Pe+(-1{dimensionless}*beta*(-1{dimensionless}+theta_13))+B*D*psi_13*exp(gamma+(-1{dimensionless}*gamma/theta_13));
    ode(theta_14, t) = -25{dimensionless}*theta_15+25{dimensionless}*theta_13+(-5000{dimensionless}*theta_14+2500{dimensionless}*theta_13+2500{dimensionless}*theta_15)/Pe+(-1{dimensionless}*beta*(-1{dimensionless}+theta_14))+B*D*psi_14*exp(gamma+(-1{dimensionless}*gamma/theta_14));
    ode(theta_15, t) = -25{dimensionless}*theta_16+25{dimensionless}*theta_14+(-5000{dimensionless}*theta_15+2500{dimensionless}*theta_14+2500{dimensionless}*theta_16)/Pe+(-1{dimensionless}*beta*(-1{dimensionless}+theta_15))+B*D*psi_15*exp(gamma+(-1{dimensionless}*gamma/theta_15));
    ode(theta_16, t) = -25{dimensionless}*theta_17+25{dimensionless}*theta_15+(-5000{dimensionless}*theta_16+2500{dimensionless}*theta_15+2500{dimensionless}*theta_17)/Pe+(-1{dimensionless}*beta*(-1{dimensionless}+theta_16))+B*D*psi_16*exp(gamma+(-1{dimensionless}*gamma/theta_16));
    ode(theta_17, t) = -25{dimensionless}*theta_18+25{dimensionless}*theta_16+(-5000{dimensionless}*theta_17+2500{dimensionless}*theta_16+2500{dimensionless}*theta_18)/Pe+(-1{dimensionless}*beta*(-1{dimensionless}+theta_17))+B*D*psi_17*exp(gamma+(-1{dimensionless}*gamma/theta_17));
    ode(theta_18, t) = -25{dimensionless}*theta_19+25{dimensionless}*theta_17+(-5000{dimensionless}*theta_18+2500{dimensionless}*theta_17+2500{dimensionless}*theta_19)/Pe+(-1{dimensionless}*beta*(-1{dimensionless}+theta_18))+B*D*psi_18*exp(gamma+(-1{dimensionless}*gamma/theta_18));
    ode(theta_19, t) = -25{dimensionless}*theta_20+25{dimensionless}*theta_18+(-5000{dimensionless}*theta_19+2500{dimensionless}*theta_18+2500{dimensionless}*theta_20)/Pe+(-1{dimensionless}*beta*(-1{dimensionless}+theta_19))+B*D*psi_19*exp(gamma+(-1{dimensionless}*gamma/theta_19));
    ode(theta_20, t) = -25{dimensionless}*theta_21+25{dimensionless}*theta_19+(-5000{dimensionless}*theta_20+2500{dimensionless}*theta_19+2500{dimensionless}*theta_21)/Pe+(-1{dimensionless}*beta*(-1{dimensionless}+theta_20))+B*D*psi_20*exp(gamma+(-1{dimensionless}*gamma/theta_20));
    ode(theta_21, t) = -25{dimensionless}*theta_22+25{dimensionless}*theta_20+(-5000{dimensionless}*theta_21+2500{dimensionless}*theta_20+2500{dimensionless}*theta_22)/Pe+(-1{dimensionless}*beta*(-1{dimensionless}+theta_21))+B*D*psi_21*exp(gamma+(-1{dimensionless}*gamma/theta_21));
    ode(theta_22, t) = -25{dimensionless}*theta_23+25{dimensionless}*theta_21+(-5000{dimensionless}*theta_22+2500{dimensionless}*theta_21+2500{dimensionless}*theta_23)/Pe+(-1{dimensionless}*beta*(-1{dimensionless}+theta_22))+B*D*psi_22*exp(gamma+(-1{dimensionless}*gamma/theta_22));
    ode(theta_23, t) = -25{dimensionless}*theta_24+25{dimensionless}*theta_22+(-5000{dimensionless}*theta_23+2500{dimensionless}*theta_22+2500{dimensionless}*theta_24)/Pe+(-1{dimensionless}*beta*(-1{dimensionless}+theta_23))+B*D*psi_23*exp(gamma+(-1{dimensionless}*gamma/theta_23));
    ode(theta_24, t) = -25{dimensionless}*theta_25+25{dimensionless}*theta_23+(-5000{dimensionless}*theta_24+2500{dimensionless}*theta_23+2500{dimensionless}*theta_25)/Pe+(-1{dimensionless}*beta*(-1{dimensionless}+theta_24))+B*D*psi_24*exp(gamma+(-1{dimensionless}*gamma/theta_24));
    ode(theta_25, t) = -25{dimensionless}*theta_26+25{dimensionless}*theta_24+(-5000{dimensionless}*theta_25+2500{dimensionless}*theta_24+2500{dimensionless}*theta_26)/Pe+(-1{dimensionless}*beta*(-1{dimensionless}+theta_25))+B*D*psi_25*exp(gamma+(-1{dimensionless}*gamma/theta_25));
    ode(theta_26, t) = -25{dimensionless}*theta_27+25{dimensionless}*theta_25+(-5000{dimensionless}*theta_26+2500{dimensionless}*theta_25+2500{dimensionless}*theta_27)/Pe+(-1{dimensionless}*beta*(-1{dimensionless}+theta_26))+B*D*psi_26*exp(gamma+(-1{dimensionless}*gamma/theta_26));
    ode(theta_27, t) = -25{dimensionless}*theta_28+25{dimensionless}*theta_26+(-5000{dimensionless}*theta_27+2500{dimensionless}*theta_26+2500{dimensionless}*theta_28)/Pe+(-1{dimensionless}*beta*(-1{dimensionless}+theta_27))+B*D*psi_27*exp(gamma+(-1{dimensionless}*gamma/theta_27));
    ode(theta_28, t) = -25{dimensionless}*theta_29+25{dimensionless}*theta_27+(-5000{dimensionless}*theta_28+2500{dimensionless}*theta_27+2500{dimensionless}*theta_29)/Pe+(-1{dimensionless}*beta*(-1{dimensionless}+theta_28))+B*D*psi_28*exp(gamma+(-1{dimensionless}*gamma/theta_28));
    ode(theta_29, t) = -25{dimensionless}*theta_30+25{dimensionless}*theta_28+(-5000{dimensionless}*theta_29+2500{dimensionless}*theta_28+2500{dimensionless}*theta_30)/Pe+(-1{dimensionless}*beta*(-1{dimensionless}+theta_29))+B*D*psi_29*exp(gamma+(-1{dimensionless}*gamma/theta_29));
    ode(theta_30, t) = -25{dimensionless}*theta_31+25{dimensionless}*theta_29+(-5000{dimensionless}*theta_30+2500{dimensionless}*theta_29+2500{dimensionless}*theta_31)/Pe+(-1{dimensionless}*beta*(-1{dimensionless}+theta_30))+B*D*psi_30*exp(gamma+(-1{dimensionless}*gamma/theta_30));
    ode(theta_31, t) = -25{dimensionless}*theta_32+25{dimensionless}*theta_30+(-5000{dimensionless}*theta_31+2500{dimensionless}*theta_30+2500{dimensionless}*theta_32)/Pe+(-1{dimensionless}*beta*(-1{dimensionless}+theta_31))+B*D*psi_31*exp(gamma+(-1{dimensionless}*gamma/theta_31));
    ode(theta_32, t) = -25{dimensionless}*theta_33+25{dimensionless}*theta_31+(-5000{dimensionless}*theta_32+2500{dimensionless}*theta_31+2500{dimensionless}*theta_33)/Pe+(-1{dimensionless}*beta*(-1{dimensionless}+theta_32))+B*D*psi_32*exp(gamma+(-1{dimensionless}*gamma/theta_32));
    ode(theta_33, t) = -25{dimensionless}*theta_34+25{dimensionless}*theta_32+(-5000{dimensionless}*theta_33+2500{dimensionless}*theta_32+2500{dimensionless}*theta_34)/Pe+(-1{dimensionless}*beta*(-1{dimensionless}+theta_33))+B*D*psi_33*exp(gamma+(-1{dimensionless}*gamma/theta_33));
    ode(theta_34, t) = -25{dimensionless}*theta_35+25{dimensionless}*theta_33+(-5000{dimensionless}*theta_34+2500{dimensionless}*theta_33+2500{dimensionless}*theta_35)/Pe+(-1{dimensionless}*beta*(-1{dimensionless}+theta_34))+B*D*psi_34*exp(gamma+(-1{dimensionless}*gamma/theta_34));
    ode(theta_35, t) = -25{dimensionless}*theta_36+25{dimensionless}*theta_34+(-5000{dimensionless}*theta_35+2500{dimensionless}*theta_34+2500{dimensionless}*theta_36)/Pe+(-1{dimensionless}*beta*(-1{dimensionless}+theta_35))+B*D*psi_35*exp(gamma+(-1{dimensionless}*gamma/theta_35));
    ode(theta_36, t) = -25{dimensionless}*theta_37+25{dimensionless}*theta_35+(-5000{dimensionless}*theta_36+2500{dimensionless}*theta_35+2500{dimensionless}*theta_37)/Pe+(-1{dimensionless}*beta*(-1{dimensionless}+theta_36))+B*D*psi_36*exp(gamma+(-1{dimensionless}*gamma/theta_36));
    ode(theta_37, t) = -25{dimensionless}*theta_38+25{dimensionless}*theta_36+(-5000{dimensionless}*theta_37+2500{dimensionless}*theta_36+2500{dimensionless}*theta_38)/Pe+(-1{dimensionless}*beta*(-1{dimensionless}+theta_37))+B*D*psi_37*exp(gamma+(-1{dimensionless}*gamma/theta_37));
    ode(theta_38, t) = -25{dimensionless}*theta_39+25{dimensionless}*theta_37+(-5000{dimensionless}*theta_38+2500{dimensionless}*theta_37+2500{dimensionless}*theta_39)/Pe+(-1{dimensionless}*beta*(-1{dimensionless}+theta_38))+B*D*psi_38*exp(gamma+(-1{dimensionless}*gamma/theta_38));
    ode(theta_39, t) = -25{dimensionless}*theta_40+25{dimensionless}*theta_38+(-5000{dimensionless}*theta_39+2500{dimensionless}*theta_38+2500{dimensionless}*theta_40)/Pe+(-1{dimensionless}*beta*(-1{dimensionless}+theta_39))+B*D*psi_39*exp(gamma+(-1{dimensionless}*gamma/theta_39));
    ode(theta_40, t) = -25{dimensionless}*theta_41+25{dimensionless}*theta_39+(-5000{dimensionless}*theta_40+2500{dimensionless}*theta_39+2500{dimensionless}*theta_41)/Pe+(-1{dimensionless}*beta*(-1{dimensionless}+theta_40))+B*D*psi_40*exp(gamma+(-1{dimensionless}*gamma/theta_40));
    ode(theta_41, t) = -25{dimensionless}*theta_42+25{dimensionless}*theta_40+(-5000{dimensionless}*theta_41+2500{dimensionless}*theta_40+2500{dimensionless}*theta_42)/Pe+(-1{dimensionless}*beta*(-1{dimensionless}+theta_41))+B*D*psi_41*exp(gamma+(-1{dimensionless}*gamma/theta_41));
    ode(theta_42, t) = -25{dimensionless}*theta_43+25{dimensionless}*theta_41+(-5000{dimensionless}*theta_42+2500{dimensionless}*theta_41+2500{dimensionless}*theta_43)/Pe+(-1{dimensionless}*beta*(-1{dimensionless}+theta_42))+B*D*psi_42*exp(gamma+(-1{dimensionless}*gamma/theta_42));
    ode(theta_43, t) = -25{dimensionless}*theta_44+25{dimensionless}*theta_42+(-5000{dimensionless}*theta_43+2500{dimensionless}*theta_42+2500{dimensionless}*theta_44)/Pe+(-1{dimensionless}*beta*(-1{dimensionless}+theta_43))+B*D*psi_43*exp(gamma+(-1{dimensionless}*gamma/theta_43));
    ode(theta_44, t) = -25{dimensionless}*theta_45+25{dimensionless}*theta_43+(-5000{dimensionless}*theta_44+2500{dimensionless}*theta_43+2500{dimensionless}*theta_45)/Pe+(-1{dimensionless}*beta*(-1{dimensionless}+theta_44))+B*D*psi_44*exp(gamma+(-1{dimensionless}*gamma/theta_44));
    ode(theta_45, t) = -25{dimensionless}*theta_46+25{dimensionless}*theta_44+(-5000{dimensionless}*theta_45+2500{dimensionless}*theta_44+2500{dimensionless}*theta_46)/Pe+(-1{dimensionless}*beta*(-1{dimensionless}+theta_45))+B*D*psi_45*exp(gamma+(-1{dimensionless}*gamma/theta_45));
    ode(theta_46, t) = -25{dimensionless}*theta_47+25{dimensionless}*theta_45+(-5000{dimensionless}*theta_46+2500{dimensionless}*theta_45+2500{dimensionless}*theta_47)/Pe+(-1{dimensionless}*beta*(-1{dimensionless}+theta_46))+B*D*psi_46*exp(gamma+(-1{dimensionless}*gamma/theta_46));
    ode(theta_47, t) = -25{dimensionless}*theta_48+25{dimensionless}*theta_46+(-5000{dimensionless}*theta_47+2500{dimensionless}*theta_46+2500{dimensionless}*theta_48)/Pe+(-1{dimensionless}*beta*(-1{dimensionless}+theta_47))+B*D*psi_47*exp(gamma+(-1{dimensionless}*gamma/theta_47));
    ode(theta_48, t) = -25{dimensionless}*theta_49+25{dimensionless}*theta_47+(-5000{dimensionless}*theta_48+2500{dimensionless}*theta_47+2500{dimensionless}*theta_49)/Pe+(-1{dimensionless}*beta*(-1{dimensionless}+theta_48))+B*D*psi_48*exp(gamma+(-1{dimensionless}*gamma/theta_48));
    ode(theta_49, t) = -25{dimensionless}*theta_50+25{dimensionless}*theta_48+(-5000{dimensionless}*theta_49+2500{dimensionless}*theta_48+2500{dimensionless}*theta_50)/Pe+(-1{dimensionless}*beta*(-1{dimensionless}+theta_49))+B*D*psi_49*exp(gamma+(-1{dimensionless}*gamma/theta_49));
    ode(theta_50, t) = -25{dimensionless}*theta_51+25{dimensionless}*theta_49+(-5000{dimensionless}*theta_50+2500{dimensionless}*theta_49+2500{dimensionless}*theta_51)/Pe+(-1{dimensionless}*beta*(-1{dimensionless}+theta_50))+B*D*psi_50*exp(gamma+(-1{dimensionless}*gamma/theta_50));
    ode(theta_51, t) = (-5000{dimensionless}*theta_51+5000{dimensionless}*theta_50)/Pe+(-1{dimensionless}*beta*(-1{dimensionless}+theta_51))+B*D*psi_51*exp(gamma+(-1{dimensionless}*gamma/theta_51));
  enddef;
enddef;
