<?xml version='1.0' encoding='UTF-8'?>
<model name="inlet_flow_nn_aorticbif" xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cellml="http://www.cellml.org/cellml/1.1#">
    <component name="aorticbif_flow_BC_type">
        <variable name="t" public_interface="in" units="second"/>
        <variable name="T" public_interface="in" units="second"/>
        <variable name="v" public_interface="out" units="m3_per_s"/>
        <variable name="v_0" public_interface="out" units="m3_per_s"/>
        <variable name="P" public_interface="in" units="J_per_m3"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>v_0</ci>
                <cn cellml:units="m3_per_s">1.0</cn>
            </apply>
            <apply>
                <eq/>
                <ci>v</ci>
                <apply>
                    <times/>
                    <ci>v_0</ci>
                    <apply>
                        <minus/>
                        <apply>
                            <minus/>
                            <apply>
                                <plus/>
                                <apply>
                                    <minus/>
                                    <apply>
                                        <minus/>
                                        <apply>
                                            <minus/>
                                            <apply>
                                                <minus/>
                                                <apply>
                                                    <plus/>
                                                    <apply>
                                                        <minus/>
                                                        <apply>
                                                            <minus/>
                                                            <apply>
                                                                <minus/>
                                                                <apply>
                                                                    <minus/>
                                                                    <apply>
                                                                        <plus/>
                                                                        <apply>
                                                                            <minus/>
                                                                            <apply>
                                                                                <minus/>
                                                                                <apply>
                                                                                    <minus/>
                                                                                    <apply>
                                                                                        <plus/>
                                                                                        <cn cellml:units="dimensionless" type="e-notation">7.9853<sep/>-06</cn>
                                                                                        <apply>
                                                                                            <times/>
                                                                                            <cn cellml:units="dimensionless" type="e-notation">2.6617<sep/>-05</cn>
                                                                                            <apply>
                                                                                                <sin/>
                                                                                                <apply>
                                                                                                    <plus/>
                                                                                                    <apply>
                                                                                                        <divide/>
                                                                                                        <apply>
                                                                                                            <times/>
                                                                                                            <cn cellml:units="dimensionless">2</cn>
                                                                                                            <pi/>
                                                                                                            <ci>t</ci>
                                                                                                        </apply>
                                                                                                        <ci>T</ci>
                                                                                                    </apply>
                                                                                                    <cn cellml:units="dimensionless">0.29498</cn>
                                                                                                </apply>
                                                                                            </apply>
                                                                                        </apply>
                                                                                        <apply>
                                                                                            <times/>
                                                                                            <cn cellml:units="dimensionless" type="e-notation">2.3616<sep/>-05</cn>
                                                                                            <apply>
                                                                                                <sin/>
                                                                                                <apply>
                                                                                                    <minus/>
                                                                                                    <apply>
                                                                                                        <divide/>
                                                                                                        <apply>
                                                                                                            <times/>
                                                                                                            <cn cellml:units="dimensionless">4</cn>
                                                                                                            <pi/>
                                                                                                            <ci>t</ci>
                                                                                                        </apply>
                                                                                                        <ci>T</ci>
                                                                                                    </apply>
                                                                                                    <cn cellml:units="dimensionless">1.1403</cn>
                                                                                                </apply>
                                                                                            </apply>
                                                                                        </apply>
                                                                                    </apply>
                                                                                    <apply>
                                                                                        <times/>
                                                                                        <cn cellml:units="dimensionless" type="e-notation">1.9016<sep/>-05</cn>
                                                                                        <apply>
                                                                                            <sin/>
                                                                                            <apply>
                                                                                                <plus/>
                                                                                                <apply>
                                                                                                    <divide/>
                                                                                                    <apply>
                                                                                                        <times/>
                                                                                                        <cn cellml:units="dimensionless">6</cn>
                                                                                                        <pi/>
                                                                                                        <ci>t</ci>
                                                                                                    </apply>
                                                                                                    <ci>T</ci>
                                                                                                </apply>
                                                                                                <cn cellml:units="dimensionless">0.40435</cn>
                                                                                            </apply>
                                                                                        </apply>
                                                                                    </apply>
                                                                                </apply>
                                                                                <apply>
                                                                                    <times/>
                                                                                    <cn cellml:units="dimensionless" type="e-notation">8.5899<sep/>-06</cn>
                                                                                    <apply>
                                                                                        <sin/>
                                                                                        <apply>
                                                                                            <minus/>
                                                                                            <apply>
                                                                                                <divide/>
                                                                                                <apply>
                                                                                                    <times/>
                                                                                                    <cn cellml:units="dimensionless">8</cn>
                                                                                                    <pi/>
                                                                                                    <ci>t</ci>
                                                                                                </apply>
                                                                                                <ci>T</ci>
                                                                                            </apply>
                                                                                            <cn cellml:units="dimensionless">1.1892</cn>
                                                                                        </apply>
                                                                                    </apply>
                                                                                </apply>
                                                                            </apply>
                                                                            <apply>
                                                                                <times/>
                                                                                <cn cellml:units="dimensionless" type="e-notation">2.436<sep/>-06</cn>
                                                                                <apply>
                                                                                    <sin/>
                                                                                    <apply>
                                                                                        <minus/>
                                                                                        <apply>
                                                                                            <divide/>
                                                                                            <apply>
                                                                                                <times/>
                                                                                                <cn cellml:units="dimensionless">10</cn>
                                                                                                <pi/>
                                                                                                <ci>t</ci>
                                                                                            </apply>
                                                                                            <ci>T</ci>
                                                                                        </apply>
                                                                                        <cn cellml:units="dimensionless">1.4918</cn>
                                                                                    </apply>
                                                                                </apply>
                                                                            </apply>
                                                                        </apply>
                                                                        <apply>
                                                                            <times/>
                                                                            <cn cellml:units="dimensionless" type="e-notation">1.4905<sep/>-06</cn>
                                                                            <apply>
                                                                                <sin/>
                                                                                <apply>
                                                                                    <plus/>
                                                                                    <apply>
                                                                                        <divide/>
                                                                                        <apply>
                                                                                            <times/>
                                                                                            <cn cellml:units="dimensionless">12</cn>
                                                                                            <pi/>
                                                                                            <ci>t</ci>
                                                                                        </apply>
                                                                                        <ci>T</ci>
                                                                                    </apply>
                                                                                    <cn cellml:units="dimensionless">1.0536</cn>
                                                                                </apply>
                                                                            </apply>
                                                                        </apply>
                                                                        <apply>
                                                                            <times/>
                                                                            <cn cellml:units="dimensionless" type="e-notation">1.3581<sep/>-06</cn>
                                                                            <apply>
                                                                                <sin/>
                                                                                <apply>
                                                                                    <minus/>
                                                                                    <apply>
                                                                                        <divide/>
                                                                                        <apply>
                                                                                            <times/>
                                                                                            <cn cellml:units="dimensionless">14</cn>
                                                                                            <pi/>
                                                                                            <ci>t</ci>
                                                                                        </apply>
                                                                                        <ci>T</ci>
                                                                                    </apply>
                                                                                    <cn cellml:units="dimensionless">0.47666</cn>
                                                                                </apply>
                                                                            </apply>
                                                                        </apply>
                                                                    </apply>
                                                                    <apply>
                                                                        <times/>
                                                                        <cn cellml:units="dimensionless" type="e-notation">6.3031<sep/>-07</cn>
                                                                        <apply>
                                                                            <sin/>
                                                                            <apply>
                                                                                <plus/>
                                                                                <apply>
                                                                                    <divide/>
                                                                                    <apply>
                                                                                        <times/>
                                                                                        <cn cellml:units="dimensionless">16</cn>
                                                                                        <pi/>
                                                                                        <ci>t</ci>
                                                                                    </apply>
                                                                                    <ci>T</ci>
                                                                                </apply>
                                                                                <cn cellml:units="dimensionless">0.93768</cn>
                                                                            </apply>
                                                                        </apply>
                                                                    </apply>
                                                                </apply>
                                                                <apply>
                                                                    <times/>
                                                                    <cn cellml:units="dimensionless" type="e-notation">4.5335<sep/>-07</cn>
                                                                    <apply>
                                                                        <sin/>
                                                                        <apply>
                                                                            <minus/>
                                                                            <apply>
                                                                                <divide/>
                                                                                <apply>
                                                                                    <times/>
                                                                                    <cn cellml:units="dimensionless">18</cn>
                                                                                    <pi/>
                                                                                    <ci>t</ci>
                                                                                </apply>
                                                                                <ci>T</ci>
                                                                            </apply>
                                                                            <cn cellml:units="dimensionless">0.79472</cn>
                                                                        </apply>
                                                                    </apply>
                                                                </apply>
                                                            </apply>
                                                            <apply>
                                                                <times/>
                                                                <cn cellml:units="dimensionless" type="e-notation">4.5184<sep/>-07</cn>
                                                                <apply>
                                                                    <sin/>
                                                                    <apply>
                                                                        <minus/>
                                                                        <apply>
                                                                            <divide/>
                                                                            <apply>
                                                                                <times/>
                                                                                <cn cellml:units="dimensionless">20</cn>
                                                                                <pi/>
                                                                                <ci>t</ci>
                                                                            </apply>
                                                                            <ci>T</ci>
                                                                        </apply>
                                                                        <cn cellml:units="dimensionless">1.4095</cn>
                                                                    </apply>
                                                                </apply>
                                                            </apply>
                                                        </apply>
                                                        <apply>
                                                            <times/>
                                                            <cn cellml:units="dimensionless" type="e-notation">5.6583<sep/>-07</cn>
                                                            <apply>
                                                                <sin/>
                                                                <apply>
                                                                    <minus/>
                                                                    <apply>
                                                                        <divide/>
                                                                        <apply>
                                                                            <times/>
                                                                            <cn cellml:units="dimensionless">22</cn>
                                                                            <pi/>
                                                                            <ci>t</ci>
                                                                        </apply>
                                                                        <ci>T</ci>
                                                                    </apply>
                                                                    <cn cellml:units="dimensionless">1.3629</cn>
                                                                </apply>
                                                            </apply>
                                                        </apply>
                                                    </apply>
                                                    <apply>
                                                        <times/>
                                                        <cn cellml:units="dimensionless" type="e-notation">4.9522<sep/>-07</cn>
                                                        <apply>
                                                            <sin/>
                                                            <apply>
                                                                <plus/>
                                                                <apply>
                                                                    <divide/>
                                                                    <apply>
                                                                        <times/>
                                                                        <cn cellml:units="dimensionless">24</cn>
                                                                        <pi/>
                                                                        <ci>t</ci>
                                                                    </apply>
                                                                    <ci>T</ci>
                                                                </apply>
                                                                <cn cellml:units="dimensionless">0.52495</cn>
                                                            </apply>
                                                        </apply>
                                                    </apply>
                                                    <apply>
                                                        <times/>
                                                        <cn cellml:units="dimensionless" type="e-notation">1.3049<sep/>-07</cn>
                                                        <apply>
                                                            <sin/>
                                                            <apply>
                                                                <minus/>
                                                                <apply>
                                                                    <divide/>
                                                                    <apply>
                                                                        <times/>
                                                                        <cn cellml:units="dimensionless">26</cn>
                                                                        <pi/>
                                                                        <ci>t</ci>
                                                                    </apply>
                                                                    <ci>T</ci>
                                                                </apply>
                                                                <cn cellml:units="dimensionless">0.97261</cn>
                                                            </apply>
                                                        </apply>
                                                    </apply>
                                                </apply>
                                                <apply>
                                                    <times/>
                                                    <cn cellml:units="dimensionless" type="e-notation">4.1072<sep/>-08</cn>
                                                    <apply>
                                                        <sin/>
                                                        <apply>
                                                            <minus/>
                                                            <apply>
                                                                <divide/>
                                                                <apply>
                                                                    <times/>
                                                                    <cn cellml:units="dimensionless">28</cn>
                                                                    <pi/>
                                                                    <ci>t</ci>
                                                                </apply>
                                                                <ci>T</ci>
                                                            </apply>
                                                            <cn cellml:units="dimensionless">0.15685</cn>
                                                        </apply>
                                                    </apply>
                                                </apply>
                                            </apply>
                                            <apply>
                                                <times/>
                                                <cn cellml:units="dimensionless" type="e-notation">2.4182<sep/>-07</cn>
                                                <apply>
                                                    <sin/>
                                                    <apply>
                                                        <minus/>
                                                        <apply>
                                                            <divide/>
                                                            <apply>
                                                                <times/>
                                                                <cn cellml:units="dimensionless">30</cn>
                                                                <pi/>
                                                                <ci>t</ci>
                                                            </apply>
                                                            <ci>T</ci>
                                                        </apply>
                                                        <cn cellml:units="dimensionless">1.4052</cn>
                                                    </apply>
                                                </apply>
                                            </apply>
                                        </apply>
                                        <apply>
                                            <times/>
                                            <cn cellml:units="dimensionless" type="e-notation">6.6217<sep/>-08</cn>
                                            <apply>
                                                <sin/>
                                                <apply>
                                                    <minus/>
                                                    <apply>
                                                        <divide/>
                                                        <apply>
                                                            <times/>
                                                            <cn cellml:units="dimensionless">32</cn>
                                                            <pi/>
                                                            <ci>t</ci>
                                                        </apply>
                                                        <ci>T</ci>
                                                    </apply>
                                                    <cn cellml:units="dimensionless">1.3785</cn>
                                                </apply>
                                            </apply>
                                        </apply>
                                    </apply>
                                    <apply>
                                        <times/>
                                        <cn cellml:units="dimensionless" type="e-notation">1.5511<sep/>-07</cn>
                                        <apply>
                                            <sin/>
                                            <apply>
                                                <minus/>
                                                <apply>
                                                    <divide/>
                                                    <apply>
                                                        <times/>
                                                        <cn cellml:units="dimensionless">34</cn>
                                                        <pi/>
                                                        <ci>t</ci>
                                                    </apply>
                                                    <ci>T</ci>
                                                </apply>
                                                <cn cellml:units="dimensionless">1.2927</cn>
                                            </apply>
                                        </apply>
                                    </apply>
                                </apply>
                                <apply>
                                    <times/>
                                    <cn cellml:units="dimensionless" type="e-notation">2.2149<sep/>-07</cn>
                                    <apply>
                                        <sin/>
                                        <apply>
                                            <plus/>
                                            <apply>
                                                <divide/>
                                                <apply>
                                                    <times/>
                                                    <cn cellml:units="dimensionless">36</cn>
                                                    <pi/>
                                                    <ci>t</ci>
                                                </apply>
                                                <ci>T</ci>
                                            </apply>
                                            <cn cellml:units="dimensionless">0.68178</cn>
                                        </apply>
                                    </apply>
                                </apply>
                                <apply>
                                    <times/>
                                    <cn cellml:units="dimensionless" type="e-notation">6.7621<sep/>-08</cn>
                                    <apply>
                                        <sin/>
                                        <apply>
                                            <minus/>
                                            <apply>
                                                <divide/>
                                                <apply>
                                                    <times/>
                                                    <cn cellml:units="dimensionless">38</cn>
                                                    <pi/>
                                                    <ci>t</ci>
                                                </apply>
                                                <ci>T</ci>
                                            </apply>
                                            <cn cellml:units="dimensionless">0.98825</cn>
                                        </apply>
                                    </apply>
                                </apply>
                                <apply>
                                    <times/>
                                    <cn cellml:units="dimensionless" type="e-notation">1.0973<sep/>-07</cn>
                                    <apply>
                                        <sin/>
                                        <apply>
                                            <plus/>
                                            <apply>
                                                <divide/>
                                                <apply>
                                                    <times/>
                                                    <cn cellml:units="dimensionless">40</cn>
                                                    <pi/>
                                                    <ci>t</ci>
                                                </apply>
                                                <ci>T</ci>
                                            </apply>
                                            <cn cellml:units="dimensionless">1.4327</cn>
                                        </apply>
                                    </apply>
                                </apply>
                            </apply>
                            <apply>
                                <times/>
                                <cn cellml:units="dimensionless" type="e-notation">2.5559<sep/>-08</cn>
                                <apply>
                                    <sin/>
                                    <apply>
                                        <minus/>
                                        <apply>
                                            <divide/>
                                            <apply>
                                                <times/>
                                                <cn cellml:units="dimensionless">42</cn>
                                                <pi/>
                                                <ci>t</ci>
                                            </apply>
                                            <ci>T</ci>
                                        </apply>
                                        <cn cellml:units="dimensionless">1.2372</cn>
                                    </apply>
                                </apply>
                            </apply>
                        </apply>
                        <apply>
                            <times/>
                            <cn cellml:units="dimensionless" type="e-notation">3.5079<sep/>-08</cn>
                            <apply>
                                <sin/>
                                <apply>
                                    <plus/>
                                    <apply>
                                        <divide/>
                                        <apply>
                                            <times/>
                                            <cn cellml:units="dimensionless">44</cn>
                                            <pi/>
                                            <ci>t</ci>
                                        </apply>
                                        <ci>T</ci>
                                    </apply>
                                    <cn cellml:units="dimensionless">0.2328</cn>
                                </apply>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
        </math>
    </component>
</model>
