def model cardiomyocyte_SAN_Severi2012_v01 as
  // Severi, Fantini, Charawi and DiFrancesco 2012 rabbit sino-atrial node cell (PMR exposure e/139, CC BY 3.0), its 34 components joined into one; equations and values unchanged (see the version notes)

  def comp SAN_Severi2012 as
    var t: second {pub: in};
    var C: microF {pub: in};
    var F: coulomb_per_mole {pub: in};
    var R: joule_per_kilomole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var clamp_mode: dimensionless {pub: in};
    var V_holding: millivolt {pub: in};
    var V_test: millivolt {pub: in};
    var t_holding: second {pub: in};
    var t_test: second {pub: in};
    var ACh: millimolar {pub: in};
    var BAPTA_10_mM: dimensionless {pub: in};
    var Cs_5_mM: dimensionless {pub: in};
    var Iso_1_uM: dimensionless {pub: in};
    var Iva_3_uM: dimensionless {pub: in};
    var Cao: millimolar {pub: in};
    var Ki: millimolar {pub: in};
    var Ko: millimolar {pub: in};
    var Nao: millimolar {pub: in};
    var Km_f: millimolar {pub: in};
    var Km_Kp: millimolar {pub: in};
    var Km_Nap: millimolar {pub: in};
    var i_NaK_max: nanoA {pub: in};
    var K1ni: millimolar {pub: in};
    var K1no: millimolar {pub: in};
    var K2ni: millimolar {pub: in};
    var K2no: millimolar {pub: in};
    var K3ni: millimolar {pub: in};
    var K3no: millimolar {pub: in};
    var K_NaCa: nanoA {pub: in};
    var Kci: millimolar {pub: in};
    var Kcni: millimolar {pub: in};
    var Kco: millimolar {pub: in};
    var Qci: dimensionless {pub: in};
    var Qco: dimensionless {pub: in};
    var Qn: dimensionless {pub: in};
    var g_Na: microS {pub: in};
    var delta_m: millivolt {pub: in};
    var P_CaL: nanoA_per_millimolar {pub: in};
    var Km_fCa: millimolar {pub: in};
    var alpha_fCa: per_second {pub: in};
    var P_CaT: nanoA_per_millimolar {pub: in};
    var EC50_SR: millimolar {pub: in};
    var HSR: dimensionless {pub: in};
    var MaxSR: dimensionless {pub: in};
    var MinSR: dimensionless {pub: in};
    var kiCa: per_millimolar_second {pub: in};
    var kim: per_second {pub: in};
    var koCa: per_millimolar2_second {pub: in};
    var kom: per_second {pub: in};
    var ks: per_second {pub: in};
    var K_up: millimolar {pub: in};
    var P_up_basal: millimolar_per_second {pub: in};
    var tau_dif_Ca: second {pub: in};
    var tau_tr: second {pub: in};
    var CM_tot: millimolar {pub: in};
    var CQ_tot: millimolar {pub: in};
    var Mgi: millimolar {pub: in};
    var TC_tot: millimolar {pub: in};
    var TMC_tot: millimolar {pub: in};
    var kb_CM: per_second {pub: in};
    var kb_CQ: per_second {pub: in};
    var kb_TC: per_second {pub: in};
    var kb_TMC: per_second {pub: in};
    var kb_TMM: per_second {pub: in};
    var kf_CM: per_millimolar_second {pub: in};
    var kf_CQ: per_millimolar_second {pub: in};
    var kf_TC: per_millimolar_second {pub: in};
    var kf_TMC: per_millimolar_second {pub: in};
    var kf_TMM: per_millimolar_second {pub: in};
    var T_Ca_dynamics: second {pub: in};
    var kbBAPTA: per_second {pub: in};
    var kfBAPTA: per_millimolar_second {pub: in};
    var L_cell: micrometre {pub: in};
    var L_sub: micrometre {pub: in};
    var R_cell: micrometre {pub: in};
    var V_i_part: dimensionless {pub: in};
    var V_jsr_part: dimensionless {pub: in};
    var V_nsr_part: dimensionless {pub: in};
    var g_to: microS {pub: in};
    var g_Kr: microS {pub: in};
    var shift: millivolt {pub: in};
    var g_KACh: microS {pub: in};
    var V_ode_init: millivolt {pub: in};
    var Nai__init: millimolar {pub: in};
    var y_init: dimensionless {pub: in};
    var m_init: dimensionless {pub: in};
    var h_init: dimensionless {pub: in};
    var dL_init: dimensionless {pub: in};
    var fL_init: dimensionless {pub: in};
    var fCa_init: dimensionless {pub: in};
    var dT_init: dimensionless {pub: in};
    var fT_init: dimensionless {pub: in};
    var R_Ca_SR_release_init: dimensionless {pub: in};
    var O_init: dimensionless {pub: in};
    var I_init: dimensionless {pub: in};
    var RI_init: dimensionless {pub: in};
    var fTC_init: dimensionless {pub: in};
    var fTMC_init: dimensionless {pub: in};
    var fTMM_init: dimensionless {pub: in};
    var fCMi_init: dimensionless {pub: in};
    var fCMs_init: dimensionless {pub: in};
    var fCQ_init: dimensionless {pub: in};
    var Cai_init: millimolar {pub: in};
    var fBAPTA_init: millimolar {pub: in};
    var Ca_sub_init: millimolar {pub: in};
    var fBAPTA_sub_init: millimolar {pub: in};
    var Ca_nsr_init: millimolar {pub: in};
    var Ca_jsr_init: millimolar {pub: in};
    var q_init: dimensionless {pub: in};
    var r_init: dimensionless {pub: in};
    var paS_init: dimensionless {pub: in};
    var paF_init: dimensionless {pub: in};
    var piy_init: dimensionless {pub: in};
    var n_init: dimensionless {pub: in};
    var a_init: dimensionless {pub: in};
    var RTONF: millivolt;
    var V: millivolt {pub: out};
    var V_ode: millivolt {init: V_ode_init, pub: out};
    var i_tot: nanoA;
    var V_clamp: millivolt;
    var E_Ca: millivolt;
    var E_K: millivolt;
    var E_Na: millivolt;
    var Nai: millimolar;
    var Nai_: millimolar {init: Nai__init, pub: out};
    var ICs_on_Icontrol: dimensionless;
    var g_f_K: microS;
    var g_f_Na: microS;
    var i_f: nanoA;
    var i_fK: nanoA;
    var i_fNa: nanoA;
    var ACh_shift: millivolt;
    var Iso_shift_i_f_y_gate: millivolt;
    var tau_y: second;
    var y: dimensionless {init: y_init, pub: out};
    var y_infinity: dimensionless;
    var Iso_increase_i_NaK: dimensionless;
    var i_NaK: nanoA;
    var di: dimensionless;
    var do: dimensionless;
    var i_NaCa: nanoA;
    var k12: dimensionless;
    var k14: dimensionless;
    var k21: dimensionless;
    var k23: dimensionless;
    var k32: dimensionless;
    var k34: dimensionless;
    var k41: dimensionless;
    var k43: dimensionless;
    var x1: dimensionless;
    var x2: dimensionless;
    var x3: dimensionless;
    var x4: dimensionless;
    var E_mh: millivolt;
    var i_Na: nanoA;
    var E0_m: millivolt;
    var alpha_m: per_second;
    var beta_m: per_second;
    var m: dimensionless {init: m_init, pub: out};
    var alpha_h: per_second;
    var beta_h: per_second;
    var h: dimensionless {init: h_init, pub: out};
    var ACh_block: dimensionless;
    var Iso_increase_i_CaL: dimensionless;
    var i_CaL: nanoA;
    var i_siCa: nanoA;
    var i_siK: nanoA;
    var i_siNa: nanoA;
    var Iso_shift_i_CaL_dL_gate: millivolt;
    var Iso_slope: dimensionless;
    var adVm: millivolt;
    var alpha_dL: per_second;
    var bdVm: millivolt;
    var beta_dL: per_second;
    var dL: dimensionless {init: dL_init, pub: out};
    var dL_infinity: dimensionless;
    var tau_dL: second;
    var fL: dimensionless {init: fL_init, pub: out};
    var fL_infinity: dimensionless;
    var tau_fL: second;
    var fCa: dimensionless {init: fCa_init, pub: out};
    var fCa_infinity: dimensionless;
    var tau_fCa: second;
    var i_CaT: nanoA;
    var dT: dimensionless {init: dT_init, pub: out};
    var dT_infinity: dimensionless;
    var tau_dT: second;
    var fT: dimensionless {init: fT_init, pub: out};
    var fT_infinity: dimensionless;
    var tau_fT: second;
    var I: dimensionless {init: I_init, pub: out};
    var O: dimensionless {init: O_init, pub: out};
    var R_Ca_SR_release: dimensionless {init: R_Ca_SR_release_init, pub: out};
    var RI: dimensionless {init: RI_init, pub: out};
    var j_SRCarel: millimolar_per_second;
    var kCaSR: dimensionless;
    var kiSRCa: per_millimolar_second;
    var koSRCa: per_millimolar2_second;
    var P_up: millimolar_per_second;
    var b_up: dimensionless;
    var j_Ca_dif: millimolar_per_second;
    var j_tr: millimolar_per_second;
    var j_up: millimolar_per_second;
    var delta_fCMi: per_second;
    var delta_fCMs: per_second;
    var delta_fCQ: per_second;
    var delta_fTC: per_second;
    var delta_fTMC: per_second;
    var delta_fTMM: per_second;
    var fCMi: dimensionless {init: fCMi_init, pub: out};
    var fCMs: dimensionless {init: fCMs_init, pub: out};
    var fCQ: dimensionless {init: fCQ_init, pub: out};
    var fTC: dimensionless {init: fTC_init, pub: out};
    var fTMC: dimensionless {init: fTMC_init, pub: out};
    var fTMM: dimensionless {init: fTMM_init, pub: out};
    var BAPTA: millimolar;
    var Ca_jsr: millimolar {init: Ca_jsr_init, pub: out};
    var Ca_nsr: millimolar {init: Ca_nsr_init, pub: out};
    var Ca_sub: millimolar {init: Ca_sub_init, pub: out};
    var Cai: millimolar {init: Cai_init, pub: out};
    var fBAPTA: millimolar {init: fBAPTA_init, pub: out};
    var fBAPTA_sub: millimolar {init: fBAPTA_sub_init, pub: out};
    var V_cell: millimetre3;
    var V_i: millimetre3;
    var V_jsr: millimetre3;
    var V_nsr: millimetre3;
    var V_sub: millimetre3;
    var i_to: nanoA;
    var q: dimensionless {init: q_init, pub: out};
    var q_infinity: dimensionless;
    var tau_q: second;
    var r: dimensionless {init: r_init, pub: out};
    var r_infinity: dimensionless;
    var tau_r: second;
    var i_Kr: nanoA;
    var alfapaF: per_second;
    var betapaF: per_second;
    var paF: dimensionless {init: paF_init, pub: out};
    var paS: dimensionless {init: paS_init, pub: out};
    var pa_infinity: dimensionless;
    var tau_paF: second;
    var tau_paS: second;
    var pi_infinity: dimensionless;
    var piy: dimensionless {init: piy_init, pub: out};
    var tau_pi: second;
    var E_Ks: millivolt;
    var g_Ks: microS;
    var i_Ks: nanoA;
    var Iso_shift_i_Ks_n_gate: millivolt;
    var alpha_n: per_second;
    var beta_n: per_second;
    var n: dimensionless {init: n_init, pub: out};
    var n_infinity: dimensionless;
    var tau_n: second;
    var i_KACh: nanoA;
    var a: dimensionless {init: a_init, pub: out};
    var a_infinity: dimensionless;
    var alpha_a: per_second;
    var beta_a: per_second;
    var tau_a: second;
    // from PMR e/139 component Membrane
    i_tot = i_f+i_Kr+i_Ks+i_to+i_NaK+i_NaCa+i_Na+i_CaL+i_CaT+i_KACh;
    ode(V_ode, t) = -i_tot/C;
    RTONF = R*T/F;
    V = sel
      case clamp_mode >= 1{dimensionless}:
        V_clamp;
      otherwise:
        V_ode;
    endsel;
    // from PMR e/139 component Voltage_clamp
    V_clamp = sel
      case (t > t_holding) and (t < t_holding+t_test):
        V_test;
      otherwise:
        V_holding;
    endsel;
    // from PMR e/139 component Ionic_values
    E_Na = RTONF*ln(Nao/Nai);
    E_K = RTONF*ln(Ko/Ki);
    E_Ca = 0.5{dimensionless}*RTONF*ln(Cao/Ca_sub);
    // from PMR e/139 component Nai_concentration
    ode(Nai_, t) = -1{mA_nA}*(i_Na+i_fNa+i_siNa+3{dimensionless}*i_NaK+3{dimensionless}*i_NaCa)/(1{litre_millimetre3}*(V_i+V_sub)*F);
    Nai = sel
      case BAPTA_10_mM > 0{dimensionless}:
        7.5{millimolar};
      otherwise:
        Nai_;
    endsel;
    // from PMR e/139 component i_f
    g_f_Na = sel
      case Iva_3_uM >= 1{dimensionless}:
        0.03{microS}*(1{dimensionless}-0.66{dimensionless});
      otherwise:
        0.03{microS};
    endsel;
    g_f_K = sel
      case Iva_3_uM >= 1{dimensionless}:
        0.03{microS}*(1{dimensionless}-0.66{dimensionless});
      otherwise:
        0.03{microS};
    endsel;
    ICs_on_Icontrol = sel
      case Cs_5_mM >= 1{dimensionless}:
        10.6015{millimolar}/5{millimolar}/(10.6015{millimolar}/5{millimolar}+exp(-0.71{dimensionless}*V/25{millivolt}));
      otherwise:
        1{dimensionless};
    endsel;
    i_fNa = sqr(y)*Ko/(Ko+Km_f)*g_f_Na*(V-E_Na)*ICs_on_Icontrol;
    i_fK = sqr(y)*Ko/(Ko+Km_f)*g_f_K*(V-E_K)*ICs_on_Icontrol;
    i_f = i_fNa+i_fK;
    // from PMR e/139 component i_f_y_gate
    ACh_shift = sel
      case ACh > 0{millimolar}:
        -1{millivolt}-9.898{millivolt}*pow(1{per_millimolar}*ACh, 0.618{dimensionless})/(pow(1{per_millimolar}*ACh, 0.618{dimensionless})+0.00122423{dimensionless});
      otherwise:
        0{millivolt};
    endsel;
    Iso_shift_i_f_y_gate = sel
      case Iso_1_uM > 0{dimensionless}:
        7.5{millivolt};
      otherwise:
        0{millivolt};
    endsel;
    tau_y = 0.7166529{dimensionless}/(0.0708{per_second}*exp(-(V+5{millivolt}-ACh_shift-Iso_shift_i_f_y_gate)/20.2791{millivolt})+10.6{per_second}*exp((V-ACh_shift-Iso_shift_i_f_y_gate)/18{millivolt}));
    y_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+52.5{millivolt}-ACh_shift-Iso_shift_i_f_y_gate)/9{millivolt}));
    ode(y, t) = (y_infinity-y)/tau_y;
    // from PMR e/139 component i_NaK
    Iso_increase_i_NaK = sel
      case Iso_1_uM > 0{dimensionless}:
        1.2{dimensionless};
      otherwise:
        1{dimensionless};
    endsel;
    i_NaK = Iso_increase_i_NaK*i_NaK_max*pow(1{dimensionless}+pow(Km_Kp/Ko, 1.2{dimensionless}), -1{dimensionless})*pow(1{dimensionless}+pow(Km_Nap/Nai, 1.3{dimensionless}), -1{dimensionless})*pow(1{dimensionless}+exp(-(V-E_Na+110{millivolt})/20{millivolt}), -1{dimensionless});
    // from PMR e/139 component i_NaCa
    i_NaCa = K_NaCa*(x2*k21-x1*k12)/(x1+x2+x3+x4);
    x1 = k41*k34*(k23+k21)+k21*k32*(k43+k41);
    x2 = k32*k43*(k14+k12)+k41*k12*(k34+k32);
    x3 = k14*k43*(k23+k21)+k12*k23*(k43+k41);
    x4 = k23*k34*(k14+k12)+k14*k21*(k34+k32);
    k43 = Nai/(K3ni+Nai);
    k12 = Ca_sub/Kci*exp(-Qci*V/RTONF)/di;
    k14 = Nai/K1ni*Nai/K2ni*(1{dimensionless}+Nai/K3ni)*exp(Qn*V/(2{dimensionless}*RTONF))/di;
    k41 = exp(-Qn*V/(2{dimensionless}*RTONF));
    di = 1{dimensionless}+Ca_sub/Kci*(1{dimensionless}+exp(-Qci*V/RTONF)+Nai/Kcni)+Nai/K1ni*(1{dimensionless}+Nai/K2ni*(1{dimensionless}+Nai/K3ni));
    k34 = Nao/(K3no+Nao);
    k21 = Cao/Kco*exp(Qco*V/RTONF)/do;
    k23 = Nao/K1no*Nao/K2no*(1{dimensionless}+Nao/K3no)*exp(-Qn*V/(2{dimensionless}*RTONF))/do;
    k32 = exp(Qn*V/(2{dimensionless}*RTONF));
    do = 1{dimensionless}+Cao/Kco*(1{dimensionless}+exp(Qco*V/RTONF))+Nao/K1no*(1{dimensionless}+Nao/K2no*(1{dimensionless}+Nao/K3no));
    // from PMR e/139 component i_Na
    E_mh = RTONF*ln((Nao+0.12{dimensionless}*Ko)/(Nai+0.12{dimensionless}*Ki));
    i_Na = g_Na*pow(m, 3{dimensionless})*h*(V-E_mh);
    // from PMR e/139 component i_Na_m_gate
    E0_m = V+41{millivolt};
    alpha_m = sel
      case abs(E0_m) < delta_m:
        2000{per_second};
      otherwise:
        200{per_millivolt_second}*E0_m/(1{dimensionless}-exp(-0.1{per_millivolt}*E0_m));
    endsel;
    beta_m = 8000{per_second}*exp(-0.056{per_millivolt}*(V+66{millivolt}));
    ode(m, t) = alpha_m*(1{dimensionless}-m)-beta_m*m;
    // from PMR e/139 component i_Na_h_gate
    alpha_h = 20{per_second}*exp(-0.125{per_millivolt}*(V+75{millivolt}));
    beta_h = 2000{per_second}/(320{dimensionless}*exp(-0.1{per_millivolt}*(V+75{millivolt}))+1{dimensionless});
    ode(h, t) = alpha_h*(1{dimensionless}-h)-beta_h*h;
    // from PMR e/139 component i_CaL
    Iso_increase_i_CaL = sel
      case Iso_1_uM > 0{dimensionless}:
        1.23{dimensionless};
      otherwise:
        1{dimensionless};
    endsel;
    i_siCa = 2{dimensionless}*P_CaL*(V-0{millivolt})/(RTONF*(1{dimensionless}-exp(-1{dimensionless}*(V-0{millivolt})*2{dimensionless}/RTONF)))*(Ca_sub-Cao*exp(-2{dimensionless}*(V-0{millivolt})/RTONF))*dL*fL*fCa;
    i_siK = 0.000365{dimensionless}*P_CaL*(V-0{millivolt})/(RTONF*(1{dimensionless}-exp(-1{dimensionless}*(V-0{millivolt})/RTONF)))*(Ki-Ko*exp(-1{dimensionless}*(V-0{millivolt})/RTONF))*dL*fL*fCa;
    i_siNa = 0.0000185{dimensionless}*P_CaL*(V-0{millivolt})/(RTONF*(1{dimensionless}-exp(-1{dimensionless}*(V-0{millivolt})/RTONF)))*(Nai-Nao*exp(-1{dimensionless}*(V-0{millivolt})/RTONF))*dL*fL*fCa;
    ACh_block = 0.31{dimensionless}*ACh/(ACh+0.00009{millimolar});
    i_CaL = (i_siCa+i_siK+i_siNa)*(1{dimensionless}-ACh_block)*1{dimensionless}*Iso_increase_i_CaL;
    // from PMR e/139 component i_CaL_dL_gate
    Iso_shift_i_CaL_dL_gate = sel
      case Iso_1_uM > 0{dimensionless}:
        -8{millivolt};
      otherwise:
        0{millivolt};
    endsel;
    Iso_slope = sel
      case Iso_1_uM > 0{dimensionless}:
        0.69{dimensionless};
      otherwise:
        1{dimensionless};
    endsel;
    dL_infinity = 1{dimensionless}/(1{dimensionless}+exp(-(V+20.3{millivolt}-Iso_shift_i_CaL_dL_gate)/(Iso_slope*4.2{millivolt})));
    tau_dL = 0.001{dimensionless}/(alpha_dL+beta_dL);
    alpha_dL = -0.02839{per_millivolt_second}*(adVm+41.8{millivolt}-Iso_shift_i_CaL_dL_gate)/(exp(-(adVm+41.8{millivolt}-Iso_shift_i_CaL_dL_gate)/2.5{millivolt})-1{dimensionless})-0.0849{per_millivolt_second}*(adVm+6.8{millivolt}-Iso_shift_i_CaL_dL_gate)/(exp(-(adVm+6.8{millivolt}-Iso_shift_i_CaL_dL_gate)/4.8{millivolt})-1{dimensionless});
    adVm = sel
      case V == -41.8{millivolt}:
        -41.80001{millivolt};
      case V == 0{millivolt}:
        0{millivolt};
      case V == -6.8{millivolt}:
        -6.80001{millivolt};
      otherwise:
        V;
    endsel;
    beta_dL = 0.01143{per_millivolt_second}*(bdVm+1.8{millivolt}-Iso_shift_i_CaL_dL_gate)/(exp((bdVm+1.8{millivolt}-Iso_shift_i_CaL_dL_gate)/2.5{millivolt})-1{dimensionless});
    bdVm = sel
      case V == -1.8{millivolt}:
        -1.80001{millivolt};
      otherwise:
        V;
    endsel;
    ode(dL, t) = (dL_infinity-dL)/tau_dL;
    // from PMR e/139 component i_CaL_fL_gate
    fL_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+37.4{millivolt})/5.3{millivolt}));
    tau_fL = 0.001{dimensionless}*(44.3{second}+230{second}*exp(-sqr((V+36{millivolt})/10{millivolt})));
    ode(fL, t) = (fL_infinity-fL)/tau_fL;
    // from PMR e/139 component i_CaL_fCa_gate
    fCa_infinity = Km_fCa/(Km_fCa+Ca_sub);
    tau_fCa = 0.001{dimensionless}*fCa_infinity/alpha_fCa;
    ode(fCa, t) = (fCa_infinity-fCa)/tau_fCa;
    // from PMR e/139 component i_CaT
    i_CaT = 2{dimensionless}*P_CaT*V/(RTONF*(1{dimensionless}-exp(-1{dimensionless}*V*2{dimensionless}/RTONF)))*(Ca_sub-Cao*exp(-2{dimensionless}*V/RTONF))*dT*fT;
    // from PMR e/139 component i_CaT_dT_gate
    dT_infinity = 1{dimensionless}/(1{dimensionless}+exp(-(V+38.3{millivolt})/5.5{millivolt}));
    tau_dT = 0.001{second}/(1.068{dimensionless}*exp((V+38.3{millivolt})/30{millivolt})+1.068{dimensionless}*exp(-(V+38.3{millivolt})/30{millivolt}));
    ode(dT, t) = (dT_infinity-dT)/tau_dT;
    // from PMR e/139 component i_CaT_fT_gate
    fT_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+58.7{millivolt})/3.8{millivolt}));
    tau_fT = 1{second}/(16.67{dimensionless}*exp(-(V+75{millivolt})/83.3{millivolt})+16.67{dimensionless}*exp((V+75{millivolt})/15.38{millivolt}));
    ode(fT, t) = (fT_infinity-fT)/tau_fT;
    // from PMR e/139 component Ca_SR_release
    j_SRCarel = ks*O*(Ca_jsr-Ca_sub);
    kCaSR = MaxSR-(MaxSR-MinSR)/(1{dimensionless}+pow(EC50_SR/Ca_jsr, HSR));
    koSRCa = koCa/kCaSR;
    kiSRCa = kiCa*kCaSR;
    ode(R_Ca_SR_release, t) = kim*RI-kiSRCa*Ca_sub*R_Ca_SR_release-(koSRCa*sqr(Ca_sub)*R_Ca_SR_release-kom*O);
    ode(O, t) = koSRCa*sqr(Ca_sub)*R_Ca_SR_release-kom*O-(kiSRCa*Ca_sub*O-kim*I);
    ode(I, t) = kiSRCa*Ca_sub*O-kim*I-(kom*I-koSRCa*sqr(Ca_sub)*RI);
    ode(RI, t) = kom*I-koSRCa*sqr(Ca_sub)*RI-(kim*RI-kiSRCa*Ca_sub*R_Ca_SR_release);
    // from PMR e/139 component Ca_intracellular_fluxes
    b_up = sel
      case Iso_1_uM > 0{dimensionless}:
        -0.25{dimensionless};
      case ACh > 0{millimolar}:
        0.7{dimensionless}*ACh/(0.00009{millimolar}+ACh);
      otherwise:
        0{dimensionless};
    endsel;
    P_up = P_up_basal*(1{dimensionless}-b_up);
    j_Ca_dif = (Ca_sub-Cai)/tau_dif_Ca;
    j_up = P_up/(1{dimensionless}+K_up/Cai);
    j_tr = (Ca_nsr-Ca_jsr)/tau_tr;
    // from PMR e/139 component Ca_buffering
    ode(fTC, t) = delta_fTC;
    delta_fTC = kf_TC*Cai*(1{dimensionless}-fTC)-kb_TC*fTC;
    ode(fTMC, t) = delta_fTMC;
    delta_fTMC = kf_TMC*Cai*(1{dimensionless}-(fTMC+fTMM))-kb_TMC*fTMC;
    ode(fTMM, t) = delta_fTMM;
    delta_fTMM = kf_TMM*Mgi*(1{dimensionless}-(fTMC+fTMM))-kb_TMM*fTMM;
    ode(fCMi, t) = delta_fCMi;
    delta_fCMi = kf_CM*Cai*(1{dimensionless}-fCMi)-kb_CM*fCMi;
    ode(fCMs, t) = delta_fCMs;
    delta_fCMs = kf_CM*Ca_sub*(1{dimensionless}-fCMs)-kb_CM*fCMs;
    ode(fCQ, t) = delta_fCQ;
    delta_fCQ = kf_CQ*Ca_jsr*(1{dimensionless}-fCQ)-kb_CQ*fCQ;
    // from PMR e/139 component Ca_dynamics
    BAPTA = sel
      case (BAPTA_10_mM > 0{dimensionless}) and (t > T_Ca_dynamics):
        10{millimolar};
      otherwise:
        0{millimolar};
    endsel;
    ode(Cai, t) = 1{dimensionless}*(j_Ca_dif*V_sub-j_up*V_nsr)/V_i-(CM_tot*delta_fCMi+TC_tot*delta_fTC+TMC_tot*delta_fTMC)-(kfBAPTA*Cai*(BAPTA-fBAPTA)-kbBAPTA*fBAPTA);
    ode(fBAPTA, t) = kfBAPTA*Cai*(BAPTA-fBAPTA)-kbBAPTA*fBAPTA;
    ode(Ca_sub, t) = j_SRCarel*V_jsr/V_sub-((i_siCa+i_CaT-2{dimensionless}*i_NaCa)/(2{dimensionless}*F*V_sub)+j_Ca_dif+CM_tot*delta_fCMs)-(kfBAPTA*Ca_sub*(BAPTA-fBAPTA_sub)-kbBAPTA*fBAPTA_sub);
    ode(fBAPTA_sub, t) = kfBAPTA*Ca_sub*(BAPTA-fBAPTA_sub)-kbBAPTA*fBAPTA_sub;
    ode(Ca_nsr, t) = j_up-j_tr*V_jsr/V_nsr;
    ode(Ca_jsr, t) = j_tr-(j_SRCarel+CQ_tot*delta_fCQ);
    // from PMR e/139 component Cell_parameters
    V_cell = 0.000000001{micrometre_per_femtometre}*pi*sqr(R_cell)*L_cell;
    V_sub = 0.000000001{micrometre_per_femtometre}*2{dimensionless}*pi*L_sub*(R_cell-L_sub/2{dimensionless})*L_cell;
    V_jsr = V_jsr_part*V_cell;
    V_i = V_i_part*V_cell-V_sub;
    V_nsr = V_nsr_part*V_cell;
    // from PMR e/139 component i_to
    i_to = g_to*(V-E_K)*q*r;
    // from PMR e/139 component i_to_q_gate
    q_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+49{millivolt})/13{millivolt}));
    tau_q = 0.001{dimensionless}*0.6{dimensionless}*(65.17{dimensionless}/(0.57{per_second}*exp(-0.08{per_millivolt}*(V+44{millivolt}))+0.065{per_second}*exp(0.1{per_millivolt}*(V+45.93{millivolt})))+10.1{second});
    ode(q, t) = (q_infinity-q)/tau_q;
    // from PMR e/139 component i_to_r_gate
    r_infinity = 1{dimensionless}/(1{dimensionless}+exp(-(V-19.3{millivolt})/15{millivolt}));
    tau_r = 0.001{dimensionless}*0.66{dimensionless}*1.4{dimensionless}*(15.59{second}/(1.037{dimensionless}*exp(0.09{per_millivolt}*(V+30.61{millivolt}))+0.369{dimensionless}*exp(-0.12{per_millivolt}*(V+23.84{millivolt})))+2.98{second});
    ode(r, t) = (r_infinity-r)/tau_r;
    // from PMR e/139 component i_Kr
    i_Kr = g_Kr*(V-E_K)*(0.9{dimensionless}*paF+0.1{dimensionless}*paS)*piy;
    // from PMR e/139 component i_Kr_pa_gate
    alfapaF = 1{dimensionless}/(1{dimensionless}+exp(-(V+23.2{millivolt})/6.6{millivolt}))/(0.84655354{second}/(37.2{dimensionless}*exp(V/11.9{millivolt})+0.96{dimensionless}*exp(-V/18.5{millivolt})));
    betapaF = 4{dimensionless}*((37.2{dimensionless}*exp(V/15.9{millivolt})+0.96{dimensionless}*exp(-V/22.5{millivolt}))/0.84655354{second}-1{dimensionless}/(1{dimensionless}+exp(-(V+23.2{millivolt})/10.6{millivolt}))/(0.84655354{second}/(37.2{dimensionless}*exp(V/15.9{millivolt})+0.96{dimensionless}*exp(-V/22.5{millivolt}))));
    pa_infinity = 1{dimensionless}/(1{dimensionless}+exp(-(V+14.8{millivolt})/8.5{millivolt}));
    tau_paS = 0.84655354{second}/(4.2{dimensionless}*exp(V/17{millivolt})+0.15{dimensionless}*exp(-V/21.6{millivolt}));
    tau_paF = 1{second}/(30{dimensionless}*exp(V/10{millivolt})+exp(-V/12{millivolt}));
    ode(paS, t) = (pa_infinity-paS)/tau_paS;
    ode(paF, t) = (pa_infinity-paF)/tau_paF;
    // from PMR e/139 component i_Kr_pi_gate
    tau_pi = 1{second}/(100{dimensionless}*exp(-V/54.645{millivolt})+656{dimensionless}*exp(V/106.157{millivolt}));
    pi_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+28.6{millivolt})/17.1{millivolt}));
    ode(piy, t) = (pi_infinity-piy)/tau_pi;
    // from PMR e/139 component i_Ks
    g_Ks = sel
      case Iso_1_uM > 0{dimensionless}:
        1.2{dimensionless}*0.0016576{microS};
      otherwise:
        0.0016576{microS};
    endsel;
    E_Ks = RTONF*ln((Ko+0{dimensionless}*Nao)/(Ki+0{dimensionless}*Nai));
    i_Ks = g_Ks*(V-E_Ks)*sqr(n);
    // from PMR e/139 component i_Ks_n_gate
    Iso_shift_i_Ks_n_gate = sel
      case Iso_1_uM > 0{dimensionless}:
        -14{millivolt};
      otherwise:
        0{millivolt};
    endsel;
    n_infinity = 14{per_second}/(1{dimensionless}+exp(-(V-40{millivolt}-Iso_shift_i_Ks_n_gate)/12{millivolt}))/(14{per_second}/(1{dimensionless}+exp(-(V-40{millivolt}-Iso_shift_i_Ks_n_gate)/12{millivolt}))+1{per_second}*exp(-(V-Iso_shift_i_Ks_n_gate)/45{millivolt}));
    tau_n = 1{dimensionless}/(alpha_n+beta_n);
    alpha_n = 28{per_second}/(1{dimensionless}+exp(-(V-40{millivolt}-Iso_shift_i_Ks_n_gate)/3{millivolt}));
    beta_n = 1{per_second}*exp(-(V-Iso_shift_i_Ks_n_gate-shift-5{millivolt})/25{millivolt});
    ode(n, t) = (n_infinity-n)/tau_n;
    // from PMR e/139 component i_KACh
    i_KACh = sel
      case ACh > 0{millimolar}:
        g_KACh*(V-E_K)*(1{dimensionless}+exp((V+20{millivolt})/20{millivolt}))*a;
      otherwise:
        0{nanoA};
    endsel;
    // from PMR e/139 component i_KACh_a_gate
    alpha_a = (3.5988{per_second}-0.025641{per_second})/(1{dimensionless}+0.0000012155{dimensionless}/pow(1{per_millimolar}*ACh, 1.6951{dimensionless}))+0.025641{per_second};
    beta_a = 10{per_second}*exp(0.0133{per_millivolt}*(V+40{millivolt}));
    a_infinity = alpha_a/(alpha_a+beta_a);
    tau_a = 1{dimensionless}/(alpha_a+beta_a);
    ode(a, t) = (a_infinity-a)/tau_a;
  enddef;
enddef;
