<?xml version='1.0' encoding='UTF-8'?>
<model name="modules" xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cellml="http://www.cellml.org/cellml/1.1#">
    <component name="Ca_dynamics_Paci_2013">
        <variable name="Cai_init" public_interface="in" units="millimolar"/>
        <variable name="Ca_SR_init" public_interface="in" units="millimolar"/>
        <variable initial_value="Cai_init" name="Cai" public_interface="out" units="millimolar"/>
        <variable initial_value="Ca_SR_init" name="Ca_SR" units="millimolar"/>
        <variable name="Vc" public_interface="in" units="microm3"/>
        <variable name="V_SR" public_interface="in" units="microm3"/>
        <variable name="t" public_interface="in" units="second"/>
        <variable name="F" public_interface="in" units="C_per_M"/>
        <variable name="Vm" public_interface="in" units="volt"/>
        <variable name="Cm" public_interface="in" units="farad"/>
        <variable name="i_CaL" public_interface="in" units="A_per_F"/>
        <variable name="i_PCa" public_interface="in" units="A_per_F"/>
        <variable name="i_b_Ca" public_interface="in" units="A_per_F"/>
        <variable name="i_NaCa" public_interface="in" units="A_per_F"/>
        <variable name="a_rel" public_interface="in" units="millimolar_per_s"/>
        <variable name="b_rel" public_interface="in" units="millimolar"/>
        <variable name="c_rel" public_interface="in" units="millimolar_per_s"/>
        <variable name="g_init" public_interface="in" units="dimensionless"/>
        <variable initial_value="g_init" name="g" units="dimensionless"/>
        <variable name="tau_g" public_interface="in" units="second"/>
        <variable name="g_inf" units="dimensionless"/>
        <variable name="Kup" public_interface="in" units="millimolar"/>
        <variable name="Buf_C" public_interface="in" units="millimolar"/>
        <variable name="Buf_SR" public_interface="in" units="millimolar"/>
        <variable name="Kbuf_C" public_interface="in" units="millimolar"/>
        <variable name="Kbuf_SR" public_interface="in" units="millimolar"/>
        <variable name="Cai_bufc" units="dimensionless"/>
        <variable name="Ca_SR_bufSR" units="dimensionless"/>
        <variable name="d" public_interface="in" units="dimensionless"/>
        <variable name="VmaxUp" public_interface="in" units="millimolar_per_s"/>
        <variable name="const2" units="dimensionless"/>
        <variable name="V_leak" public_interface="in" units="per_s"/>
        <variable name="i_rel" units="millimolar_per_s"/>
        <variable name="i_up" units="millimolar_per_s"/>
        <variable name="i_leak" units="millimolar_per_s"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>i_rel</ci>
                <apply>
                    <times/>
                    <apply>
                        <plus/>
                        <ci>c_rel</ci>
                        <apply>
                            <divide/>
                            <apply>
                                <times/>
                                <ci>a_rel</ci>
                                <apply>
                                    <power/>
                                    <ci>Ca_SR</ci>
                                    <cn cellml:units="dimensionless">2</cn>
                                </apply>
                            </apply>
                            <apply>
                                <plus/>
                                <apply>
                                    <power/>
                                    <ci>b_rel</ci>
                                    <cn cellml:units="dimensionless">2</cn>
                                </apply>
                                <apply>
                                    <power/>
                                    <ci>Ca_SR</ci>
                                    <cn cellml:units="dimensionless">2</cn>
                                </apply>
                            </apply>
                        </apply>
                    </apply>
                    <ci>d</ci>
                    <ci>g</ci>
                    <cn cellml:units="dimensionless">0.0411</cn>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>i_up</ci>
                <apply>
                    <divide/>
                    <ci>VmaxUp</ci>
                    <apply>
                        <plus/>
                        <cn cellml:units="dimensionless">1</cn>
                        <apply>
                            <divide/>
                            <apply>
                                <power/>
                                <ci>Kup</ci>
                                <cn cellml:units="dimensionless">2</cn>
                            </apply>
                            <apply>
                                <power/>
                                <ci>Cai</ci>
                                <cn cellml:units="dimensionless">2</cn>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>i_leak</ci>
                <apply>
                    <times/>
                    <apply>
                        <minus/>
                        <ci>Ca_SR</ci>
                        <ci>Cai</ci>
                    </apply>
                    <ci>V_leak</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>g_inf</ci>
                <piecewise>
                    <piece>
                        <apply>
                            <divide/>
                            <cn cellml:units="dimensionless">1</cn>
                            <apply>
                                <plus/>
                                <cn cellml:units="dimensionless">1</cn>
                                <apply>
                                    <power/>
                                    <apply>
                                        <divide/>
                                        <ci>Cai</ci>
                                        <cn cellml:units="millimolar">0.00035</cn>
                                    </apply>
                                    <cn cellml:units="dimensionless">6</cn>
                                </apply>
                            </apply>
                        </apply>
                        <apply>
                            <leq/>
                            <ci>Cai</ci>
                            <cn cellml:units="millimolar">0.00035</cn>
                        </apply>
                    </piece>
                    <otherwise>
                        <apply>
                            <divide/>
                            <cn cellml:units="dimensionless">1</cn>
                            <apply>
                                <plus/>
                                <cn cellml:units="dimensionless">1</cn>
                                <apply>
                                    <power/>
                                    <apply>
                                        <divide/>
                                        <ci>Cai</ci>
                                        <cn cellml:units="millimolar">0.00035</cn>
                                    </apply>
                                    <cn cellml:units="dimensionless">16</cn>
                                </apply>
                            </apply>
                        </apply>
                    </otherwise>
                </piecewise>
            </apply>
            <apply>
                <eq/>
                <ci>const2</ci>
                <piecewise>
                    <piece>
                        <cn cellml:units="dimensionless">0</cn>
                        <apply>
                            <and/>
                            <apply>
                                <gt/>
                                <ci>g_inf</ci>
                                <ci>g</ci>
                            </apply>
                            <apply>
                                <gt/>
                                <ci>Vm</ci>
                                <apply>
                                    <minus/>
                                    <cn cellml:units="volt">0.06</cn>
                                </apply>
                            </apply>
                        </apply>
                    </piece>
                    <otherwise>
                        <cn cellml:units="dimensionless">1</cn>
                    </otherwise>
                </piecewise>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>g</ci>
                </apply>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <ci>const2</ci>
                        <apply>
                            <minus/>
                            <ci>g_inf</ci>
                            <ci>g</ci>
                        </apply>
                    </apply>
                    <ci>tau_g</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>Cai_bufc</ci>
                <apply>
                    <divide/>
                    <cn cellml:units="dimensionless">1</cn>
                    <apply>
                        <plus/>
                        <cn cellml:units="dimensionless">1</cn>
                        <apply>
                            <divide/>
                            <apply>
                                <times/>
                                <ci>Buf_C</ci>
                                <ci>Kbuf_C</ci>
                            </apply>
                            <apply>
                                <power/>
                                <apply>
                                    <plus/>
                                    <ci>Cai</ci>
                                    <ci>Kbuf_C</ci>
                                </apply>
                                <cn cellml:units="dimensionless">2</cn>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>Ca_SR_bufSR</ci>
                <apply>
                    <divide/>
                    <cn cellml:units="dimensionless">1</cn>
                    <apply>
                        <plus/>
                        <cn cellml:units="dimensionless">1</cn>
                        <apply>
                            <divide/>
                            <apply>
                                <times/>
                                <ci>Buf_SR</ci>
                                <ci>Kbuf_SR</ci>
                            </apply>
                            <apply>
                                <power/>
                                <apply>
                                    <plus/>
                                    <ci>Ca_SR</ci>
                                    <ci>Kbuf_SR</ci>
                                </apply>
                                <cn cellml:units="dimensionless">2</cn>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>Cai</ci>
                </apply>
                <apply>
                    <times/>
                    <ci>Cai_bufc</ci>
                    <apply>
                        <minus/>
                        <apply>
                            <plus/>
                            <apply>
                                <minus/>
                                <ci>i_leak</ci>
                                <ci>i_up</ci>
                            </apply>
                            <ci>i_rel</ci>
                        </apply>
                        <apply>
                            <divide/>
                            <apply>
                                <times/>
                                <apply>
                                    <minus/>
                                    <apply>
                                        <plus/>
                                        <ci>i_CaL</ci>
                                        <ci>i_b_Ca</ci>
                                        <ci>i_PCa</ci>
                                    </apply>
                                    <apply>
                                        <times/>
                                        <cn cellml:units="dimensionless">2</cn>
                                        <ci>i_NaCa</ci>
                                    </apply>
                                </apply>
                                <ci>Cm</ci>
                            </apply>
                            <apply>
                                <times/>
                                <cn cellml:units="dimensionless">2</cn>
                                <ci>Vc</ci>
                                <ci>F</ci>
                                <cn cellml:units="m3_per_microm3" type="e-notation">1<sep/>-18</cn>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>Ca_SR</ci>
                </apply>
                <apply>
                    <times/>
                    <apply>
                        <divide/>
                        <apply>
                            <times/>
                            <ci>Ca_SR_bufSR</ci>
                            <ci>Vc</ci>
                        </apply>
                        <ci>V_SR</ci>
                    </apply>
                    <apply>
                        <minus/>
                        <ci>i_up</ci>
                        <apply>
                            <plus/>
                            <ci>i_rel</ci>
                            <ci>i_leak</ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
        </math>
    </component>
    <component name="electric_potentials_Paci_2013">
        <variable name="t" public_interface="in" units="second"/>
        <variable name="E_Na" public_interface="out" units="volt"/>
        <variable name="E_K" public_interface="out" units="volt"/>
        <variable name="E_Ks" public_interface="out" units="volt"/>
        <variable name="E_Ca" public_interface="out" units="volt"/>
        <variable name="R" public_interface="in" units="J_per_MK"/>
        <variable name="T" public_interface="in" units="kelvin"/>
        <variable name="F" public_interface="in" units="C_per_M"/>
        <variable name="Nai" public_interface="in" units="millimolar"/>
        <variable name="Nao" public_interface="in" units="millimolar"/>
        <variable name="Cai" public_interface="in" units="millimolar"/>
        <variable name="Cao" public_interface="in" units="millimolar"/>
        <variable name="Ki" public_interface="in" units="millimolar"/>
        <variable name="Ko" public_interface="in" units="millimolar"/>
        <variable name="PkNa" public_interface="in" units="dimensionless"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>E_Na</ci>
                <apply>
                    <times/>
                    <apply>
                        <divide/>
                        <apply>
                            <times/>
                            <ci>R</ci>
                            <ci>T</ci>
                        </apply>
                        <ci>F</ci>
                    </apply>
                    <apply>
                        <ln/>
                        <apply>
                            <divide/>
                            <ci>Nao</ci>
                            <ci>Nai</ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>E_K</ci>
                <apply>
                    <times/>
                    <apply>
                        <divide/>
                        <apply>
                            <times/>
                            <ci>R</ci>
                            <ci>T</ci>
                        </apply>
                        <ci>F</ci>
                    </apply>
                    <apply>
                        <ln/>
                        <apply>
                            <divide/>
                            <ci>Ko</ci>
                            <ci>Ki</ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>E_Ks</ci>
                <apply>
                    <times/>
                    <apply>
                        <divide/>
                        <apply>
                            <times/>
                            <ci>R</ci>
                            <ci>T</ci>
                        </apply>
                        <ci>F</ci>
                    </apply>
                    <apply>
                        <ln/>
                        <apply>
                            <divide/>
                            <apply>
                                <plus/>
                                <ci>Ko</ci>
                                <apply>
                                    <times/>
                                    <ci>PkNa</ci>
                                    <ci>Nao</ci>
                                </apply>
                            </apply>
                            <apply>
                                <plus/>
                                <ci>Ki</ci>
                                <apply>
                                    <times/>
                                    <ci>PkNa</ci>
                                    <ci>Nai</ci>
                                </apply>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>E_Ca</ci>
                <apply>
                    <times/>
                    <apply>
                        <divide/>
                        <apply>
                            <times/>
                            <cn cellml:units="dimensionless">0.5</cn>
                            <ci>R</ci>
                            <ci>T</ci>
                        </apply>
                        <ci>F</ci>
                    </apply>
                    <apply>
                        <ln/>
                        <apply>
                            <divide/>
                            <ci>Cao</ci>
                            <ci>Cai</ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
        </math>
    </component>
    <component name="Na_dynamics_Paci_2013">
        <variable name="Nai_init" public_interface="in" units="millimolar"/>
        <variable initial_value="Nai_init" name="Nai" public_interface="out" units="millimolar"/>
        <variable name="Cm" public_interface="in" units="farad"/>
        <variable name="Vc" public_interface="in" units="microm3"/>
        <variable name="t" public_interface="in" units="second"/>
        <variable name="F" public_interface="in" units="C_per_M"/>
        <variable name="i_Na" public_interface="in" units="A_per_F"/>
        <variable name="i_b_Na" public_interface="in" units="A_per_F"/>
        <variable name="i_NaK" public_interface="in" units="A_per_F"/>
        <variable name="i_NaCa" public_interface="in" units="A_per_F"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>Nai</ci>
                </apply>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <apply>
                            <minus/>
                            <ci>Cm</ci>
                        </apply>
                        <apply>
                            <plus/>
                            <ci>i_Na</ci>
                            <ci>i_b_Na</ci>
                            <apply>
                                <times/>
                                <cn cellml:units="dimensionless">3</cn>
                                <ci>i_NaK</ci>
                            </apply>
                            <apply>
                                <times/>
                                <cn cellml:units="dimensionless">3</cn>
                                <ci>i_NaCa</ci>
                            </apply>
                        </apply>
                    </apply>
                    <apply>
                        <times/>
                        <ci>F</ci>
                        <ci>Vc</ci>
                        <cn cellml:units="m3_per_microm3" type="e-notation">1<sep/>-18</cn>
                    </apply>
                </apply>
            </apply>
        </math>
    </component>
</model>
