def model energy_metabolism_adaptive_ArgusUNPUBLISHED_v01 as

  def comp energy_metabolism_fermenter as
    var t: second {pub: in};
    var C_glc_init: millimolar {pub: in};
    var C_lac_init: millimolar {pub: in};
    var C_ATP_init: millimolar {pub: in};
    var C_ADP_init: millimolar {pub: in};
    var C_Pi_init: millimolar {pub: in};
    // species stores (bond-graph C elements): mu = mu0 + RT ln(C/c_std)
    var C_glc: millimolar {init: C_glc_init, pub: out};
    var C_lac: millimolar {init: C_lac_init, pub: out};
    var C_ATP: millimolar {init: C_ATP_init, pub: out};
    var C_ADP: millimolar {init: C_ADP_init, pub: out};
    var C_Pi: millimolar {init: C_Pi_init, pub: out};
    // summed fluxes of the faces on the entrance and exit cytosol_face_ports
    var J_glc_in: mol_per_s {pub: in};
    var J_lac_in: mol_per_s {pub: in};
    var J_ATP_in: mol_per_s {pub: in};
    var J_ADP_in: mol_per_s {pub: in};
    var J_Pi_in: mol_per_s {pub: in};
    var J_glc_out: mol_per_s {pub: in};
    var J_lac_out: mol_per_s {pub: in};
    var J_ATP_out: mol_per_s {pub: in};
    var J_ADP_out: mol_per_s {pub: in};
    var J_Pi_out: mol_per_s {pub: in};
    // summed ATP-consuming transporters (ATP_hydrolysis_port)
    var j_ATP_ext: mol_per_s {pub: in};
    var j_ADP_ext: mol_per_s {pub: in};
    var j_Pi_ext: mol_per_s {pub: in};
    // volume (compartment_volume port)
    var V_c: m3 {pub: in};
    var T: kelvin {pub: in};
    var R: J_per_mol_K {pub: in};
    var T_ref: kelvin {pub: in};
    var dT_Q10: kelvin {pub: in};
    var Q10: dimensionless {pub: in};
    var c_std: millimolar {pub: in};
    // standard Gibbs energies (glucose -&gt; 2 lactate; ATP hydrolysis)
    var dG0_ferm: J_per_mol {pub: in};
    var dG0_hyd: J_per_mol {pub: in};
    // capacity of the hexokinase step
    var V_gly: millimolar_per_s {pub: in};
    var K_glc: millimolar {pub: in};
    var K_ADP_gly: millimolar {pub: in};
    var K_Pi_gly: millimolar {pub: in};
    var K_lac: millimolar {pub: in};
    var K_ATP_gly: millimolar {pub: in};
    // ATP for half-rate of the hexokinase step
    var K_ATP_hk: millimolar {pub: in};
    // standard Gibbs energy of glucose + ATP -&gt; G6P + ADP
    var dG0_hk: J_per_mol {pub: in};
    // enthalpy released by glucose + ATP -&gt; G6P + ADP
    var h_hk: J_per_mol {pub: in};
    // capacity of the lower glycolysis
    var V_lg: millimolar_per_s {pub: in};
    // G6P for half the lower glycolysis' capacity
    var K_G6P_lg: millimolar {pub: in};
    // Hill coefficient of the lower glycolysis in G6P
    var n_G6P_lg: dimensionless {pub: in};
    var C_G6P_init: millimolar {pub: in};
    // glucose 6-phosphate: trapped in the cell (no carrier takes it)
    var C_G6P: millimolar {init: C_G6P_init, pub: out};
    // G6P delivered by group-translocating carriers, the PTS (G6P_port, summed)
    var j_G6P_ext: mol_per_s {pub: in};
    var V_hyd: millimolar_per_s {pub: in};
    var K_ATP_hyd: millimolar {pub: in};
    var K_ADP_hyd: millimolar {pub: in};
    var K_Pi_hyd: millimolar {pub: in};
    // enthalpies released (positive = heat out)
    var h_lac_gly: J_per_mol {pub: in};
    var h_ATP: J_per_mol {pub: in};
    var f_T: dimensionless {pub: out};
    var K_eq_hk: dimensionless {pub: out};
    var K_eq_lg: dimensionless {pub: out};
    var K_eq_hyd: dimensionless {pub: out};
    // mass-action ratios
    var Gamma_hk: dimensionless {pub: out};
    var Gamma_lg: dimensionless {pub: out};
    var Gamma_hyd: dimensionless {pub: out};
    // glucose entering glycolysis, the hexokinase step: glucose + ATP &lt;=&gt; G6P + ADP (the lumped pathway's common modular kinetics)
    var v_gly: millimolar_per_s {pub: out};
    // lower glycolysis: G6P + 3 ADP + 2 Pi &lt;=&gt; 2 lactate + 3 ATP
    var v_lg: millimolar_per_s {pub: out};
    // ATP &lt;=&gt; ADP + Pi, the cell's maintenance work
    var v_hyd: millimolar_per_s {pub: out};
    // affinities A = RT ln(K_eq/Gamma)
    var A_hk: J_per_mol {pub: out};
    var A_lg: J_per_mol {pub: out};
    var A_hyd: J_per_mol {pub: out};
    // free energy dissipated by the reactions (&gt;= 0, second law)
    var P_diss: watt {pub: out};
    // heat released: reaction enthalpies, including ATP hydrolysed by transporters
    var Q_met: watt {pub: out};
    // ATP used by the ATPase and the ATP_hydrolysis_port users (the PTS's PEP equivalent included)
    var J_ATP_turnover: mol_per_s {pub: out};
    // H+ released into the cytosol by all ATP hydrolysed, the maintenance ATPase and the ATP_hydrolysis_port users (H_production port): ATP4- + H2O -&gt; ADP3- + HPO4 2- + H+
    var j_H_met: mol_per_s {pub: out};
    var C_glyc_init: millimolar {pub: in};
    // glycogen, as mM of glucose units
    var C_glyc: millimolar {init: C_glyc_init, pub: out};
    // fraction of the storage capacity in use (set by the game, 0-1)
    var store_alloc: dimensionless {pub: in};
    var V_store_max: millimolar_per_s {pub: in};
    var K_G6P_store: millimolar {pub: in};
    var K_ATP_store: millimolar {pub: in};
    // storage ceiling
    var C_glyc_max: millimolar {pub: in};
    var V_mob: millimolar_per_s {pub: in};
    var K_glyc_mob: millimolar {pub: in};
    var K_Pi_mob: millimolar {pub: in};
    // ATP inhibition of mobilisation (phosphorylase)
    var K_i_ATP_mob: millimolar {pub: in};
    // glucose + 2 ATP -&gt; glycogen unit + 2 ADP + 2 Pi
    var dG0_store: J_per_mol {pub: in};
    // enthalpy released by adding a glucose to glycogen
    var h_glyc_poly: J_per_mol {pub: in};
    var K_eq_store: dimensionless {pub: out};
    var K_eq_mob: dimensionless {pub: out};
    var Gamma_store: dimensionless {pub: out};
    var Gamma_mob: dimensionless {pub: out};
    // glycogen's activity in the store's reverse (none without glycogen)
    var a_glyc: dimensionless {pub: out};
    // glycogen synthesis (ADP-glucose route): G6P + ATP -&gt; glycogen + ADP + 2 Pi
    var v_store: millimolar_per_s {pub: out};
    // glycogen phosphorylase (and phosphoglucomutase): glycogen + Pi -&gt; G6P
    var v_mob: millimolar_per_s {pub: out};
    var A_store: J_per_mol {pub: out};
    var A_mob: J_per_mol {pub: out};
    // expression of the glycolytic enzymes, 1 = the calibrated cell (enzyme_expression port, from their protein_pool)
    var m_gly: dimensionless {pub: in};
    // net ATP glycolysis makes from the sugar it takes in: 2 per glucose (the hexokinase ATP spent), 3 per G6P a carrier delivers
    var J_ATP_gly: mol_per_s {pub: out};
    // ATP made from glycogen (3 per glucose unit, through the lower glycolysis)
    var J_ATP_mob: mol_per_s {pub: out};
    // ATP spent storing glucose as glycogen (2 per glucose: the hexokinase step and ADP-glucose synthesis)
    var J_ATP_store: mol_per_s {pub: out};
    // ATP the hexokinase step spends
    var J_ATP_hk: mol_per_s {pub: out};
    // ATP the lower glycolysis makes (3 per G6P)
    var J_ATP_lg: mol_per_s {pub: out};
    // ATP hydrolysed by the maintenance ATPase (everything not itemised)
    var J_ATP_maint: mol_per_s {pub: out};
    // ATP the glycogen store would give if spent (3 per glucose unit; glycogen_store port)
    var M_glyc_ATP: mole {pub: out};
    // fraction of the matrix-making capacity in use (set by the game, 0-1)
    var mx_alloc: dimensionless {pub: in};
    var V_mx_max: millimolar_per_s {pub: in};
    var K_G6P_mx: millimolar {pub: in};
    var K_ATP_mx: millimolar {pub: in};
    // ATP per glucose unit of matrix made from G6P (activation, carrier, export; the G6P's phosphorylation is one more)
    var n_ATP_mx: dimensionless {pub: in};
    // G6P + n ATP -&gt; matrix unit (outside) + n ADP + (n + 1) Pi
    var dG0_mx: J_per_mol {pub: in};
    // enthalpy released by adding a glucose unit to the matrix
    var h_mx_poly: J_per_mol {pub: in};
    var K_eq_mx: dimensionless {pub: out};
    var Gamma_mx: dimensionless {pub: out};
    // matrix synthesis and export: glucose + n ATP -&gt; matrix + n ADP + n Pi
    var v_mx: millimolar_per_s {pub: out};
    var A_mx: J_per_mol {pub: out};
    // glucose units of matrix exported (matrix_export port)
    var J_mx: mol_per_s {pub: out};
    // ATP spent making matrix (n per glucose unit)
    var J_ATP_mx: mol_per_s {pub: out};
    // regulation by ATP, 0-1, 1 at and above rest (maintenance_regulation port)
    var f_ATP_reg: dimensionless {pub: in};
    // regulation by G6P, 0-1, 1 at and above rest (maintenance_regulation port)
    var f_G6P_reg: dimensionless {pub: in};
    // regulation by glucose inside, 0-1, 1 at and above rest (maintenance_regulation port)
    var f_glc_reg: dimensionless {pub: in};
    // regulation by H+ (falling pH), 0-1, 1 at and above rest (maintenance_regulation port)
    var f_H_reg: dimensionless {pub: in};
    // 1: falling ATP lowers the maintenance ATPase (set by the game); 0: it does not
    var reg_on_ATP: dimensionless {pub: in};
    // 1: falling G6P lowers the maintenance ATPase (set by the game); 0: it does not
    var reg_on_G6P: dimensionless {pub: in};
    // 1: falling glucose inside lowers the maintenance ATPase (set by the game); 0: it does not
    var reg_on_glc: dimensionless {pub: in};
    // 1: falling H+ (falling pH) lowers the maintenance ATPase (set by the game); 0: it does not
    var reg_on_H: dimensionless {pub: in};
    // regulation factor on the maintenance ATPase: prod (1 - reg_on + reg_on f)
    var R_reg: dimensionless {pub: out};
    R_reg = (1.0{dimensionless}-reg_on_ATP+reg_on_ATP*f_ATP_reg)*(1.0{dimensionless}-reg_on_G6P+reg_on_G6P*f_G6P_reg)*(1.0{dimensionless}-reg_on_glc+reg_on_glc*f_glc_reg)*(1.0{dimensionless}-reg_on_H+reg_on_H*f_H_reg);
    f_T = pow(Q10, (T-T_ref)/dT_Q10);
    K_eq_hk = exp(-dG0_hk/(R*T));
    K_eq_lg = exp(-(dG0_ferm-2.0{dimensionless}*dG0_hyd-dG0_hk)/(R*T));
    K_eq_hyd = exp(-dG0_hyd/(R*T));
    Gamma_hk = C_G6P/c_std*(C_ADP/c_std)/(C_glc/c_std*(C_ATP/c_std));
    Gamma_lg = sqr(C_lac/c_std)*pow(C_ATP/c_std, 3.0{dimensionless})/(C_G6P/c_std*pow(C_ADP/c_std, 3.0{dimensionless})*sqr(C_Pi/c_std));
    Gamma_hyd = C_ADP/c_std*(C_Pi/c_std)/(C_ATP/c_std);
    v_gly = V_gly*m_gly*f_T*sqr(C_ADP/K_ADP_gly)*sqr(C_Pi/K_Pi_gly)*(C_glc*C_ATP-C_G6P*C_ADP/K_eq_hk)/(K_glc*(K_ATP_hk+C_ATP))/((1.0{dimensionless}+C_glc/K_glc)*sqr(1.0{dimensionless}+C_ADP/K_ADP_gly)*sqr(1.0{dimensionless}+C_Pi/K_Pi_gly)+sqr(1.0{dimensionless}+C_lac/K_lac)*sqr(1.0{dimensionless}+C_ATP/K_ATP_gly)-1.0{dimensionless});
    v_lg = V_lg*m_gly*f_T*pow(abs(C_G6P), n_G6P_lg-1.0{dimensionless})*(C_G6P-sqr(C_lac)*pow(C_ATP, 3.0{dimensionless})*c_std/(pow(C_ADP, 3.0{dimensionless})*sqr(C_Pi)*K_eq_lg))/(pow(K_G6P_lg, n_G6P_lg)+pow(abs(C_G6P), n_G6P_lg))*C_ADP/(K_ADP_gly+C_ADP)*C_Pi/(K_Pi_gly+C_Pi);
    v_hyd = V_hyd*R_reg*f_T*(C_ATP/K_ATP_hyd)*(1.0{dimensionless}-Gamma_hyd/K_eq_hyd)/(1.0{dimensionless}+C_ATP/K_ATP_hyd+(1.0{dimensionless}+C_ADP/K_ADP_hyd)*(1.0{dimensionless}+C_Pi/K_Pi_hyd)-1.0{dimensionless});
    A_hk = R*T*(ln(K_eq_hk)-ln(abs(Gamma_hk)+1e-300{dimensionless}));
    A_lg = R*T*(ln(K_eq_lg)-ln(abs(Gamma_lg)+1e-300{dimensionless}));
    A_hyd = R*T*(ln(K_eq_hyd)-ln(abs(Gamma_hyd)+1e-300{dimensionless}));
    K_eq_store = exp(-(dG0_store-dG0_hk)/(R*T));
    K_eq_mob = exp(-(dG0_hk+dG0_hyd-dG0_store)/(R*T));
    a_glyc = C_glyc/(K_glyc_mob+C_glyc);
    Gamma_store = a_glyc*(C_ADP/c_std)*sqr(C_Pi/c_std)/(C_G6P/c_std*(C_ATP/c_std));
    Gamma_mob = C_G6P/c_std/(C_Pi/c_std);
    v_store = V_store_max*store_alloc*f_T*(C_G6P*C_ATP-a_glyc*C_ADP*sqr(C_Pi)/(c_std*K_eq_store))/((K_G6P_store+C_G6P)*(K_ATP_store+C_ATP))/(1.0{dimensionless}+pow(C_glyc/C_glyc_max, 8.0{dimensionless}));
    v_mob = V_mob*f_T*C_glyc/(K_glyc_mob+C_glyc)*(C_Pi-C_G6P/K_eq_mob)/(K_Pi_mob+C_Pi)*K_i_ATP_mob/(K_i_ATP_mob+C_ATP);
    A_store = R*T*(ln(K_eq_store)-ln(abs(Gamma_store)+1e-300{dimensionless}));
    A_mob = R*T*(ln(K_eq_mob)-ln(abs(Gamma_mob)+1e-300{dimensionless}));
    K_eq_mx = exp(-dG0_mx/(R*T));
    Gamma_mx = pow(C_ADP/c_std, n_ATP_mx)*pow(C_Pi/c_std, n_ATP_mx+1.0{dimensionless})/(C_G6P/c_std*pow(C_ATP/c_std, n_ATP_mx));
    v_mx = V_mx_max*mx_alloc*f_T*C_G6P/(K_G6P_mx+C_G6P)*C_ATP/(K_ATP_mx+C_ATP)*(1.0{dimensionless}-Gamma_mx/K_eq_mx+abs(1.0{dimensionless}-Gamma_mx/K_eq_mx))/2.0{dimensionless};
    A_mx = R*T*(ln(K_eq_mx)-ln(abs(Gamma_mx)+1e-300{dimensionless}));
    P_diss = V_c*(v_gly*A_hk+v_lg*A_lg+v_hyd*A_hyd+v_store*A_store+v_mob*A_mob+v_mx*A_mx);
    J_ATP_turnover = V_c*v_hyd-j_ATP_ext;
    j_H_met = V_c*(v_hyd+v_gly-v_lg+v_store+n_ATP_mx*v_mx)-j_ATP_ext;
    Q_met = V_c*(v_gly*h_hk+v_lg*(2.0{dimensionless}*h_lac_gly-2.0{dimensionless}*h_ATP-h_hk)+v_hyd*h_ATP+v_store*(2.0{dimensionless}*h_ATP+h_glyc_poly-h_hk)+v_mob*(h_hk-h_ATP-h_glyc_poly)+v_mx*((n_ATP_mx+1.0{dimensionless})*h_ATP+h_mx_poly-h_hk))+j_Pi_ext*h_ATP+j_G6P_ext*h_hk;
    ode(C_glc, t) = (J_glc_in+J_glc_out)/V_c-v_gly;
    ode(C_G6P, t) = j_G6P_ext/V_c+v_gly+v_mob-v_lg-v_store-v_mx;
    ode(C_lac, t) = (J_lac_in+J_lac_out)/V_c+2.0{dimensionless}*v_lg;
    ode(C_ATP, t) = (J_ATP_in+J_ATP_out+j_ATP_ext)/V_c-v_gly+3.0{dimensionless}*v_lg-v_hyd-v_store-n_ATP_mx*v_mx;
    ode(C_ADP, t) = (J_ADP_in+J_ADP_out+j_ADP_ext)/V_c+v_gly-3.0{dimensionless}*v_lg+v_hyd+v_store+n_ATP_mx*v_mx;
    ode(C_Pi, t) = (J_Pi_in+J_Pi_out+j_Pi_ext)/V_c-2.0{dimensionless}*v_lg+v_hyd+2.0{dimensionless}*v_store-v_mob+(n_ATP_mx+1.0{dimensionless})*v_mx;
    ode(C_glyc, t) = v_store-v_mob;
    J_ATP_hk = V_c*v_gly;
    J_ATP_lg = 3.0{dimensionless}*V_c*v_lg;
    J_ATP_gly = J_ATP_lg-J_ATP_hk-J_ATP_mob+V_c*v_store+V_c*v_mx;
    J_ATP_mob = 3.0{dimensionless}*V_c*v_mob;
    J_ATP_store = 2.0{dimensionless}*V_c*v_store;
    J_ATP_maint = V_c*v_hyd;
    M_glyc_ATP = 3.0{dimensionless}*V_c*C_glyc;
    J_mx = V_c*v_mx;
    J_ATP_mx = (n_ATP_mx+1.0{dimensionless})*V_c*v_mx;
  enddef;
enddef;
