def model glycolysis_detailed_ArgusUNPUBLISHED_v01 as

  def comp glycolysis_detailed as
    var t: second {pub: in};
    var R: J_per_mol_K {pub: in};
    var T: kelvin {pub: in};
    // standard chemical potential of glucose (from the reactions' Gibbs energies, tools/bondgraph.py)
    var mu0_glc: J_per_mol {pub: in};
    var c_std_glc: millimolar {pub: in};
    // glucose in the cytosol (metabolite port)
    var C_glc: millimolar {pub: in};
    // net production of glucose here
    var j_glc: millimolar_per_s {pub: out};
    // standard chemical potential of glucose 6-phosphate (from the reactions' Gibbs energies, tools/bondgraph.py)
    var mu0_G6P: J_per_mol {pub: in};
    var c_std_G6P: millimolar {pub: in};
    var C_G6P_init: millimolar {pub: in};
    // glucose 6-phosphate
    var C_G6P: millimolar {init: C_G6P_init, pub: out};
    // standard chemical potential of fructose 6-phosphate (from the reactions' Gibbs energies, tools/bondgraph.py)
    var mu0_F6P: J_per_mol {pub: in};
    var c_std_F6P: millimolar {pub: in};
    var C_F6P_init: millimolar {pub: in};
    // fructose 6-phosphate
    var C_F6P: millimolar {init: C_F6P_init, pub: out};
    // standard chemical potential of fructose 1,6-bisphosphate (from the reactions' Gibbs energies, tools/bondgraph.py)
    var mu0_F16BP: J_per_mol {pub: in};
    var c_std_F16BP: millimolar {pub: in};
    var C_F16BP_init: millimolar {pub: in};
    // fructose 1,6-bisphosphate
    var C_F16BP: millimolar {init: C_F16BP_init, pub: out};
    // standard chemical potential of dihydroxyacetone phosphate (from the reactions' Gibbs energies, tools/bondgraph.py)
    var mu0_DHAP: J_per_mol {pub: in};
    var c_std_DHAP: millimolar {pub: in};
    var C_DHAP_init: millimolar {pub: in};
    // dihydroxyacetone phosphate
    var C_DHAP: millimolar {init: C_DHAP_init, pub: out};
    // standard chemical potential of glyceraldehyde 3-phosphate (from the reactions' Gibbs energies, tools/bondgraph.py)
    var mu0_GAP: J_per_mol {pub: in};
    var c_std_GAP: millimolar {pub: in};
    var C_GAP_init: millimolar {pub: in};
    // glyceraldehyde 3-phosphate
    var C_GAP: millimolar {init: C_GAP_init, pub: out};
    // standard chemical potential of 1,3-bisphosphoglycerate (from the reactions' Gibbs energies, tools/bondgraph.py)
    var mu0_BPG13: J_per_mol {pub: in};
    var c_std_BPG13: millimolar {pub: in};
    var C_BPG13_init: millimolar {pub: in};
    // 1,3-bisphosphoglycerate
    var C_BPG13: millimolar {init: C_BPG13_init, pub: out};
    // standard chemical potential of 3-phosphoglycerate (from the reactions' Gibbs energies, tools/bondgraph.py)
    var mu0_PG3: J_per_mol {pub: in};
    var c_std_PG3: millimolar {pub: in};
    var C_PG3_init: millimolar {pub: in};
    // 3-phosphoglycerate
    var C_PG3: millimolar {init: C_PG3_init, pub: out};
    // standard chemical potential of 2-phosphoglycerate (from the reactions' Gibbs energies, tools/bondgraph.py)
    var mu0_PG2: J_per_mol {pub: in};
    var c_std_PG2: millimolar {pub: in};
    var C_PG2_init: millimolar {pub: in};
    // 2-phosphoglycerate
    var C_PG2: millimolar {init: C_PG2_init, pub: out};
    // standard chemical potential of phosphoenolpyruvate (from the reactions' Gibbs energies, tools/bondgraph.py)
    var mu0_PEP: J_per_mol {pub: in};
    var c_std_PEP: millimolar {pub: in};
    var C_PEP_init: millimolar {pub: in};
    // phosphoenolpyruvate
    var C_PEP: millimolar {init: C_PEP_init, pub: out};
    // standard chemical potential of pyruvate (from the reactions' Gibbs energies, tools/bondgraph.py)
    var mu0_Pyr: J_per_mol {pub: in};
    var c_std_Pyr: millimolar {pub: in};
    var C_Pyr_init: millimolar {pub: in};
    // pyruvate
    var C_Pyr: millimolar {init: C_Pyr_init, pub: out};
    // standard chemical potential of lactate (from the reactions' Gibbs energies, tools/bondgraph.py)
    var mu0_lac: J_per_mol {pub: in};
    var c_std_lac: millimolar {pub: in};
    // lactate in the cytosol (metabolite port)
    var C_lac: millimolar {pub: in};
    // net production of lactate here
    var j_lac: millimolar_per_s {pub: out};
    // standard chemical potential of NAD+ (from the reactions' Gibbs energies, tools/bondgraph.py)
    var mu0_NAD: J_per_mol {pub: in};
    var c_std_NAD: millimolar {pub: in};
    var C_NAD_init: millimolar {pub: in};
    // NAD+
    var C_NAD: millimolar {init: C_NAD_init, pub: out};
    // standard chemical potential of NADH (from the reactions' Gibbs energies, tools/bondgraph.py)
    var mu0_NADH: J_per_mol {pub: in};
    var c_std_NADH: millimolar {pub: in};
    var C_NADH_init: millimolar {pub: in};
    // NADH
    var C_NADH: millimolar {init: C_NADH_init, pub: out};
    // standard chemical potential of ATP (from the reactions' Gibbs energies, tools/bondgraph.py)
    var mu0_ATP: J_per_mol {pub: in};
    var c_std_ATP: millimolar {pub: in};
    // ATP in the cytosol (metabolite port)
    var C_ATP: millimolar {pub: in};
    // net production of ATP here
    var j_ATP: millimolar_per_s {pub: out};
    // standard chemical potential of ADP (from the reactions' Gibbs energies, tools/bondgraph.py)
    var mu0_ADP: J_per_mol {pub: in};
    var c_std_ADP: millimolar {pub: in};
    // ADP in the cytosol (metabolite port)
    var C_ADP: millimolar {pub: in};
    // net production of ADP here
    var j_ADP: millimolar_per_s {pub: out};
    // standard chemical potential of phosphate (HPO4 2-) (from the reactions' Gibbs energies, tools/bondgraph.py)
    var mu0_Pi: J_per_mol {pub: in};
    var c_std_Pi: millimolar {pub: in};
    // phosphate (HPO4 2-) in the cytosol (metabolite port)
    var C_Pi: millimolar {pub: in};
    // net production of phosphate (HPO4 2-) here
    var j_Pi: millimolar_per_s {pub: out};
    // standard chemical potential of H+ (from the reactions' Gibbs energies, tools/bondgraph.py)
    var mu0_H: J_per_mol {pub: in};
    var c_std_H: millimolar {pub: in};
    // H+ in the cytosol (metabolite port)
    var C_H: millimolar {pub: in};
    // net production of H+ here
    var j_H: millimolar_per_s {pub: out};
    // standard chemical potential of water (from the reactions' Gibbs energies, tools/bondgraph.py)
    var mu0_H2O: J_per_mol {pub: in};
    var c_std_H2O: millimolar {pub: in};
    // water in the cytosol (metabolite port)
    var C_H2O: millimolar {pub: in};
    // net production of water here
    var j_H2O: millimolar_per_s {pub: out};
    // hexokinase: rate constant
    var kappa_HK: millimolar_per_s {pub: in};
    // exp(forward affinity / RT)
    var Pf_HK: dimensionless {pub: out};
    // exp(reverse affinity / RT)
    var Pr_HK: dimensionless {pub: out};
    // hexokinase
    var v_HK: millimolar_per_s {pub: out};
    // affinity: minus the reaction's Gibbs energy
    var A_HK: J_per_mol {pub: out};
    // saturation (half-saturated at Pf = sigma)
    var sigma_HK: dimensionless {pub: in};
    // glucose-6-phosphate isomerase: rate constant
    var kappa_PGI: millimolar_per_s {pub: in};
    // exp(forward affinity / RT)
    var Pf_PGI: dimensionless {pub: out};
    // exp(reverse affinity / RT)
    var Pr_PGI: dimensionless {pub: out};
    // glucose-6-phosphate isomerase
    var v_PGI: millimolar_per_s {pub: out};
    // affinity: minus the reaction's Gibbs energy
    var A_PGI: J_per_mol {pub: out};
    // phosphofructokinase: rate constant
    var kappa_PFK: millimolar_per_s {pub: in};
    // exp(forward affinity / RT)
    var Pf_PFK: dimensionless {pub: out};
    // exp(reverse affinity / RT)
    var Pr_PFK: dimensionless {pub: out};
    // phosphofructokinase
    var v_PFK: millimolar_per_s {pub: out};
    // affinity: minus the reaction's Gibbs energy
    var A_PFK: J_per_mol {pub: out};
    // saturation (half-saturated at Pf = sigma)
    var sigma_PFK: dimensionless {pub: in};
    // aldolase: rate constant
    var kappa_ALD: millimolar_per_s {pub: in};
    // exp(forward affinity / RT)
    var Pf_ALD: dimensionless {pub: out};
    // exp(reverse affinity / RT)
    var Pr_ALD: dimensionless {pub: out};
    // aldolase
    var v_ALD: millimolar_per_s {pub: out};
    // affinity: minus the reaction's Gibbs energy
    var A_ALD: J_per_mol {pub: out};
    // triose-phosphate isomerase: rate constant
    var kappa_TPI: millimolar_per_s {pub: in};
    // exp(forward affinity / RT)
    var Pf_TPI: dimensionless {pub: out};
    // exp(reverse affinity / RT)
    var Pr_TPI: dimensionless {pub: out};
    // triose-phosphate isomerase
    var v_TPI: millimolar_per_s {pub: out};
    // affinity: minus the reaction's Gibbs energy
    var A_TPI: J_per_mol {pub: out};
    // glyceraldehyde-3-P dehydrogenase: rate constant
    var kappa_GAPDH: millimolar_per_s {pub: in};
    // exp(forward affinity / RT)
    var Pf_GAPDH: dimensionless {pub: out};
    // exp(reverse affinity / RT)
    var Pr_GAPDH: dimensionless {pub: out};
    // glyceraldehyde-3-P dehydrogenase
    var v_GAPDH: millimolar_per_s {pub: out};
    // affinity: minus the reaction's Gibbs energy
    var A_GAPDH: J_per_mol {pub: out};
    // phosphoglycerate kinase: rate constant
    var kappa_PGK: millimolar_per_s {pub: in};
    // exp(forward affinity / RT)
    var Pf_PGK: dimensionless {pub: out};
    // exp(reverse affinity / RT)
    var Pr_PGK: dimensionless {pub: out};
    // phosphoglycerate kinase
    var v_PGK: millimolar_per_s {pub: out};
    // affinity: minus the reaction's Gibbs energy
    var A_PGK: J_per_mol {pub: out};
    // phosphoglycerate mutase: rate constant
    var kappa_PGM: millimolar_per_s {pub: in};
    // exp(forward affinity / RT)
    var Pf_PGM: dimensionless {pub: out};
    // exp(reverse affinity / RT)
    var Pr_PGM: dimensionless {pub: out};
    // phosphoglycerate mutase
    var v_PGM: millimolar_per_s {pub: out};
    // affinity: minus the reaction's Gibbs energy
    var A_PGM: J_per_mol {pub: out};
    // enolase: rate constant
    var kappa_ENO: millimolar_per_s {pub: in};
    // exp(forward affinity / RT)
    var Pf_ENO: dimensionless {pub: out};
    // exp(reverse affinity / RT)
    var Pr_ENO: dimensionless {pub: out};
    // enolase
    var v_ENO: millimolar_per_s {pub: out};
    // affinity: minus the reaction's Gibbs energy
    var A_ENO: J_per_mol {pub: out};
    // pyruvate kinase: rate constant
    var kappa_PK: millimolar_per_s {pub: in};
    // exp(forward affinity / RT)
    var Pf_PK: dimensionless {pub: out};
    // exp(reverse affinity / RT)
    var Pr_PK: dimensionless {pub: out};
    // pyruvate kinase
    var v_PK: millimolar_per_s {pub: out};
    // affinity: minus the reaction's Gibbs energy
    var A_PK: J_per_mol {pub: out};
    // activation of pyruvate kinase by F16BP
    var Ka_F16BP_PK: millimolar {pub: in};
    // saturation (half-saturated at Pf = sigma)
    var sigma_PK: dimensionless {pub: in};
    // lactate dehydrogenase: rate constant
    var kappa_LDH: millimolar_per_s {pub: in};
    // exp(forward affinity / RT)
    var Pf_LDH: dimensionless {pub: out};
    // exp(reverse affinity / RT)
    var Pr_LDH: dimensionless {pub: out};
    // lactate dehydrogenase
    var v_LDH: millimolar_per_s {pub: out};
    // affinity: minus the reaction's Gibbs energy
    var A_LDH: J_per_mol {pub: out};
    // saturation (half-saturated at Pf = sigma)
    var sigma_LDH: dimensionless {pub: in};
    // free energy dissipated, sum v A (&gt;= 0, second law)
    var P_diss: W_per_m3 {pub: out};
    Pf_HK = exp(mu0_glc/(R*T))*C_glc/c_std_glc*(exp(mu0_ATP/(R*T))*C_ATP/c_std_ATP);
    Pr_HK = exp(mu0_G6P/(R*T))*C_G6P/c_std_G6P*(exp(mu0_ADP/(R*T))*C_ADP/c_std_ADP)*(exp(mu0_H/(R*T))*C_H/c_std_H);
    v_HK = kappa_HK*(Pf_HK-Pr_HK)/(1.0{dimensionless}+(Pf_HK+Pr_HK)/sigma_HK);
    A_HK = R*T*(ln(Pf_HK)-ln(Pr_HK));
    Pf_PGI = exp(mu0_G6P/(R*T))*C_G6P/c_std_G6P;
    Pr_PGI = exp(mu0_F6P/(R*T))*C_F6P/c_std_F6P;
    v_PGI = kappa_PGI*(Pf_PGI-Pr_PGI);
    A_PGI = R*T*(ln(Pf_PGI)-ln(Pr_PGI));
    Pf_PFK = exp(mu0_F6P/(R*T))*C_F6P/c_std_F6P*(exp(mu0_ATP/(R*T))*C_ATP/c_std_ATP);
    Pr_PFK = exp(mu0_F16BP/(R*T))*C_F16BP/c_std_F16BP*(exp(mu0_ADP/(R*T))*C_ADP/c_std_ADP)*(exp(mu0_H/(R*T))*C_H/c_std_H);
    v_PFK = kappa_PFK*(Pf_PFK-Pr_PFK)/(1.0{dimensionless}+(Pf_PFK+Pr_PFK)/sigma_PFK);
    A_PFK = R*T*(ln(Pf_PFK)-ln(Pr_PFK));
    Pf_ALD = exp(mu0_F16BP/(R*T))*C_F16BP/c_std_F16BP;
    Pr_ALD = exp(mu0_DHAP/(R*T))*C_DHAP/c_std_DHAP*(exp(mu0_GAP/(R*T))*C_GAP/c_std_GAP);
    v_ALD = kappa_ALD*(Pf_ALD-Pr_ALD);
    A_ALD = R*T*(ln(Pf_ALD)-ln(Pr_ALD));
    Pf_TPI = exp(mu0_DHAP/(R*T))*C_DHAP/c_std_DHAP;
    Pr_TPI = exp(mu0_GAP/(R*T))*C_GAP/c_std_GAP;
    v_TPI = kappa_TPI*(Pf_TPI-Pr_TPI);
    A_TPI = R*T*(ln(Pf_TPI)-ln(Pr_TPI));
    Pf_GAPDH = exp(mu0_GAP/(R*T))*C_GAP/c_std_GAP*(exp(mu0_Pi/(R*T))*C_Pi/c_std_Pi)*(exp(mu0_NAD/(R*T))*C_NAD/c_std_NAD);
    Pr_GAPDH = exp(mu0_BPG13/(R*T))*C_BPG13/c_std_BPG13*(exp(mu0_NADH/(R*T))*C_NADH/c_std_NADH)*(exp(mu0_H/(R*T))*C_H/c_std_H);
    v_GAPDH = kappa_GAPDH*(Pf_GAPDH-Pr_GAPDH);
    A_GAPDH = R*T*(ln(Pf_GAPDH)-ln(Pr_GAPDH));
    Pf_PGK = exp(mu0_BPG13/(R*T))*C_BPG13/c_std_BPG13*(exp(mu0_ADP/(R*T))*C_ADP/c_std_ADP);
    Pr_PGK = exp(mu0_PG3/(R*T))*C_PG3/c_std_PG3*(exp(mu0_ATP/(R*T))*C_ATP/c_std_ATP);
    v_PGK = kappa_PGK*(Pf_PGK-Pr_PGK);
    A_PGK = R*T*(ln(Pf_PGK)-ln(Pr_PGK));
    Pf_PGM = exp(mu0_PG3/(R*T))*C_PG3/c_std_PG3;
    Pr_PGM = exp(mu0_PG2/(R*T))*C_PG2/c_std_PG2;
    v_PGM = kappa_PGM*(Pf_PGM-Pr_PGM);
    A_PGM = R*T*(ln(Pf_PGM)-ln(Pr_PGM));
    Pf_ENO = exp(mu0_PG2/(R*T))*C_PG2/c_std_PG2;
    Pr_ENO = exp(mu0_PEP/(R*T))*C_PEP/c_std_PEP*(exp(mu0_H2O/(R*T))*C_H2O/c_std_H2O);
    v_ENO = kappa_ENO*(Pf_ENO-Pr_ENO);
    A_ENO = R*T*(ln(Pf_ENO)-ln(Pr_ENO));
    Pf_PK = exp(mu0_PEP/(R*T))*C_PEP/c_std_PEP*(exp(mu0_ADP/(R*T))*C_ADP/c_std_ADP)*(exp(mu0_H/(R*T))*C_H/c_std_H);
    Pr_PK = exp(mu0_Pyr/(R*T))*C_Pyr/c_std_Pyr*(exp(mu0_ATP/(R*T))*C_ATP/c_std_ATP);
    v_PK = kappa_PK*(1.0{dimensionless}+C_F16BP/Ka_F16BP_PK)*(Pf_PK-Pr_PK)/(1.0{dimensionless}+(Pf_PK+Pr_PK)/sigma_PK);
    A_PK = R*T*(ln(Pf_PK)-ln(Pr_PK));
    Pf_LDH = exp(mu0_Pyr/(R*T))*C_Pyr/c_std_Pyr*(exp(mu0_NADH/(R*T))*C_NADH/c_std_NADH)*(exp(mu0_H/(R*T))*C_H/c_std_H);
    Pr_LDH = exp(mu0_lac/(R*T))*C_lac/c_std_lac*(exp(mu0_NAD/(R*T))*C_NAD/c_std_NAD);
    v_LDH = kappa_LDH*(Pf_LDH-Pr_LDH)/(1.0{dimensionless}+(Pf_LDH+Pr_LDH)/sigma_LDH);
    A_LDH = R*T*(ln(Pf_LDH)-ln(Pr_LDH));
    j_glc = -v_HK;
    ode(C_G6P, t) = v_HK-v_PGI;
    ode(C_F6P, t) = v_PGI-v_PFK;
    ode(C_F16BP, t) = v_PFK-v_ALD;
    ode(C_DHAP, t) = v_ALD-v_TPI;
    ode(C_GAP, t) = v_ALD+v_TPI-v_GAPDH;
    ode(C_BPG13, t) = v_GAPDH-v_PGK;
    ode(C_PG3, t) = v_PGK-v_PGM;
    ode(C_PG2, t) = v_PGM-v_ENO;
    ode(C_PEP, t) = v_ENO-v_PK;
    ode(C_Pyr, t) = v_PK-v_LDH;
    j_lac = v_LDH;
    ode(C_NAD, t) = -v_GAPDH+v_LDH;
    ode(C_NADH, t) = v_GAPDH-v_LDH;
    j_ATP = -v_HK-v_PFK+v_PGK+v_PK;
    j_ADP = v_HK+v_PFK-v_PGK-v_PK;
    j_Pi = -v_GAPDH;
    j_H = v_HK+v_PFK+v_GAPDH-v_PK-v_LDH;
    j_H2O = v_ENO;
    P_diss = v_HK*A_HK+v_PGI*A_PGI+v_PFK*A_PFK+v_ALD*A_ALD+v_TPI*A_TPI+v_GAPDH*A_GAPDH+v_PGK*A_PGK+v_PGM*A_PGM+v_ENO*A_ENO+v_PK*A_PK+v_LDH*A_LDH;
  enddef;
enddef;
