<?xml version='1.0' encoding='UTF-8'?>
<model name="i_Ca_Tao2011_v01" xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cellml="http://www.cellml.org/cellml/1.1#">
    <component name="i_Ca_Tao_2011">
        <variable name="i_Ca" public_interface="out" units="nanoA"/>
        <variable name="t" public_interface="in" units="second"/>
        <variable name="Vm" public_interface="in" units="milliV"/>
        <variable name="Cai" public_interface="in" units="millimolar"/>
        <variable name="Cao" public_interface="in" units="millimolar"/>
        <variable name="R" public_interface="in" units="J_per_MK"/>
        <variable name="T" public_interface="in" units="kelvin"/>
        <variable name="F" public_interface="in" units="C_per_M"/>
        <variable name="P_Ca" public_interface="in" units="m_per_s"/>
        <variable initial_value="0.0" name="c" units="dimensionless"/>
        <variable name="c_bar" units="dimensionless"/>
        <variable name="tau_c" units="second"/>
        <variable initial_value="0.0" name="hc" units="dimensionless"/>
        <variable name="hc_bar" units="dimensionless"/>
        <variable name="tau_hc" units="second"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>i_Ca</ci>
                <apply>
                    <times/>
                    <apply>
                        <divide/>
                        <apply>
                            <times/>
                            <apply>
                                <divide/>
                                <apply>
                                    <times/>
                                    <cn cellml:units="dimensionless">4</cn>
                                    <apply>
                                        <power/>
                                        <ci>F</ci>
                                        <cn cellml:units="dimensionless">2</cn>
                                    </apply>
                                    <ci>Vm</ci>
                                    <ci>P_Ca</ci>
                                </apply>
                                <apply>
                                    <times/>
                                    <ci>R</ci>
                                    <ci>T</ci>
                                </apply>
                            </apply>
                            <apply>
                                <minus/>
                                <apply>
                                    <times/>
                                    <ci>Cai</ci>
                                    <apply>
                                        <exp/>
                                        <apply>
                                            <divide/>
                                            <apply>
                                                <times/>
                                                <cn cellml:units="dimensionless">2</cn>
                                                <ci>Vm</ci>
                                                <ci>F</ci>
                                            </apply>
                                            <apply>
                                                <times/>
                                                <ci>R</ci>
                                                <ci>T</ci>
                                            </apply>
                                        </apply>
                                    </apply>
                                </apply>
                                <ci>Cao</ci>
                            </apply>
                        </apply>
                        <apply>
                            <minus/>
                            <apply>
                                <exp/>
                                <apply>
                                    <divide/>
                                    <apply>
                                        <times/>
                                        <cn cellml:units="dimensionless">2</cn>
                                        <ci>Vm</ci>
                                        <ci>F</ci>
                                    </apply>
                                    <apply>
                                        <times/>
                                        <ci>R</ci>
                                        <ci>T</ci>
                                    </apply>
                                </apply>
                            </apply>
                            <cn cellml:units="dimensionless">1</cn>
                        </apply>
                    </apply>
                    <apply>
                        <power/>
                        <ci>c</ci>
                        <cn cellml:units="dimensionless">2</cn>
                    </apply>
                    <ci>hc</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>c_bar</ci>
                <apply>
                    <divide/>
                    <cn cellml:units="dimensionless">1</cn>
                    <apply>
                        <plus/>
                        <cn cellml:units="dimensionless">1</cn>
                        <apply>
                            <exp/>
                            <apply>
                                <divide/>
                                <apply>
                                    <minus/>
                                    <apply>
                                        <plus/>
                                        <ci>Vm</ci>
                                        <cn cellml:units="milliV">8.1</cn>
                                    </apply>
                                </apply>
                                <cn cellml:units="milliV">9.85</cn>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>c</ci>
                </apply>
                <apply>
                    <divide/>
                    <apply>
                        <minus/>
                        <ci>c_bar</ci>
                        <ci>c</ci>
                    </apply>
                    <ci>tau_c</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>tau_c</ci>
                <apply>
                    <plus/>
                    <apply>
                        <divide/>
                        <cn cellml:units="second">1</cn>
                        <apply>
                            <plus/>
                            <apply>
                                <times/>
                                <cn cellml:units="dimensionless">0.343</cn>
                                <apply>
                                    <exp/>
                                    <apply>
                                        <times/>
                                        <cn cellml:units="per_milliV">0.0925</cn>
                                        <ci>Vm</ci>
                                    </apply>
                                </apply>
                            </apply>
                            <apply>
                                <times/>
                                <cn cellml:units="dimensionless">1.88</cn>
                                <apply>
                                    <exp/>
                                    <apply>
                                        <times/>
                                        <apply>
                                            <minus/>
                                            <cn cellml:units="per_milliV">0.00732</cn>
                                        </apply>
                                        <ci>Vm</ci>
                                    </apply>
                                </apply>
                            </apply>
                        </apply>
                    </apply>
                    <cn cellml:units="second">0.1</cn>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>hc_bar</ci>
                <apply>
                    <divide/>
                    <cn cellml:units="dimensionless">1</cn>
                    <apply>
                        <plus/>
                        <cn cellml:units="dimensionless">1</cn>
                        <apply>
                            <exp/>
                            <apply>
                                <divide/>
                                <apply>
                                    <minus/>
                                    <apply>
                                        <plus/>
                                        <ci>Vm</ci>
                                        <cn cellml:units="milliV">19.91</cn>
                                    </apply>
                                </apply>
                                <cn cellml:units="milliV">4.5</cn>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>hc</ci>
                </apply>
                <apply>
                    <divide/>
                    <apply>
                        <minus/>
                        <ci>hc_bar</ci>
                        <ci>hc</ci>
                    </apply>
                    <ci>tau_hc</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>tau_hc</ci>
                <apply>
                    <plus/>
                    <apply>
                        <divide/>
                        <cn cellml:units="second">1</cn>
                        <apply>
                            <plus/>
                            <apply>
                                <times/>
                                <cn cellml:units="dimensionless">0.242</cn>
                                <apply>
                                    <exp/>
                                    <apply>
                                        <times/>
                                        <cn cellml:units="per_milliV">0.145</cn>
                                        <ci>Vm</ci>
                                    </apply>
                                </apply>
                            </apply>
                            <apply>
                                <times/>
                                <cn cellml:units="dimensionless">0.0434</cn>
                                <apply>
                                    <exp/>
                                    <apply>
                                        <times/>
                                        <apply>
                                            <minus/>
                                            <cn cellml:units="per_milliV">0.0201</cn>
                                        </apply>
                                        <ci>Vm</ci>
                                    </apply>
                                </apply>
                            </apply>
                        </apply>
                    </apply>
                    <cn cellml:units="second">17</cn>
                </apply>
            </apply>
        </math>
    </component>
</model>
