<?xml version='1.0' encoding='UTF-8'?>
<model name="i_Kv2_Argus2026_v01" xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cellml="http://www.cellml.org/cellml/1.1#">
    <component name="i_Kv2_SN">
        <variable name="t" units="second" public_interface="in"/>
        <variable name="E_K" public_interface="in" units="milliV"/>
        <variable name="F" public_interface="in" units="C_per_mol"/>
        <variable name="V" public_interface="in" units="milliV"/>
        <variable name="V_den_m_Kv2" public_interface="in" units="milliV"/>
        <variable name="V_mid_m_Kv2" public_interface="in" units="milliV"/>
        <variable name="V_rest_approx" public_interface="in" units="milliV"/>
        <variable name="epsilon_tau" units="second" initial_value="1e-6"/>
        <variable name="g_Kv2" public_interface="out" units="microS"/>
        <variable name="A_mem" public_interface="in" units="um2"/>
        <variable name="rho_Kv2" public_interface="in" units="per_um2"/>
        <variable name="gamma_Kv2" public_interface="in" units="picoS"/>
        <variable name="i_Kv2" public_interface="out" units="nanoA"/>
        <variable name="j_Kv2" public_interface="out" units="mol_per_s"/>
        <variable name="m_Kv2" public_interface="out" units="dimensionless" initial_value="m_Kv2_init"/>
        <variable name="m_Kv2_inf" public_interface="out" units="dimensionless"/>
        <variable name="m_Kv2_init" public_interface="out" units="dimensionless"/>
        <variable name="tau_m_Kv2" public_interface="out" units="millis"/>
        <!-- temperature scaling of the gating kinetics: every gating time constant is divided by phi = Q10^((T - T_ref)/10 K) (review 2026-10-05) -->
        <variable name="T" public_interface="in" units="kelvin"/>
        <variable name="Q10_Kv2" public_interface="in" units="dimensionless"/>
        <variable name="T_ref_Kv2" public_interface="in" units="kelvin"/>
        <variable name="phi_Kv2" public_interface="out" units="dimensionless"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>m_Kv2_init</ci>
                <apply>
                    <divide/>
                    <cn cellml:units="dimensionless">1</cn>
                    <apply>
                        <plus/>
                        <cn cellml:units="dimensionless">1</cn>
                        <apply>
                            <exp/>
                            <apply>
                                <divide/>
                                <apply>
                                    <minus/>
                                    <apply>
                                        <plus/>
                                        <ci>V_rest_approx</ci>
                                        <ci>V_mid_m_Kv2</ci>
                                    </apply>
                                </apply>
                                <ci>V_den_m_Kv2</ci>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>m_Kv2_inf</ci>
                <apply>
                    <divide/>
                    <cn cellml:units="dimensionless">1</cn>
                    <apply>
                        <plus/>
                        <cn cellml:units="dimensionless">1</cn>
                        <apply>
                            <exp/>
                            <apply>
                                <divide/>
                                <apply>
                                    <minus/>
                                    <apply>
                                        <plus/>
                                        <ci>V</ci>
                                        <ci>V_mid_m_Kv2</ci>
                                    </apply>
                                </apply>
                                <ci>V_den_m_Kv2</ci>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>tau_m_Kv2</ci>
                <apply>
                    <plus/>
                    <cn cellml:units="millis">2.31</cn>
                    <apply>
                        <divide/>
                        <cn cellml:units="millis">45</cn>
                        <apply>
                            <plus/>
                            <apply>
                                <exp/>
                                <apply>
                                    <divide/>
                                    <apply>
                                        <plus/>
                                        <ci>V_mid_m_Kv2</ci>
                                        <ci>V</ci>
                                        <cn cellml:units="milliV">10</cn>
                                    </apply>
                                    <cn cellml:units="milliV">4</cn>
                                </apply>
                            </apply>
                            <apply>
                                <exp/>
                                <apply>
                                    <divide/>
                                    <apply>
                                        <minus/>
                                        <apply>
                                            <plus/>
                                            <ci>V_mid_m_Kv2</ci>
                                            <ci>V</ci>
                                            <cn cellml:units="milliV">10</cn>
                                        </apply>
                                    </apply>
                                    <cn cellml:units="milliV">4</cn>
                                </apply>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>m_Kv2</ci>
                </apply>
                <apply>
                    <divide/>
                    <apply>
                        <minus/>
                        <ci>m_Kv2_inf</ci>
                        <ci>m_Kv2</ci>
                    </apply>
                    <apply>
                        <plus/>
                        <apply>
                            <divide/>
                            <apply>
                                <abs/>
                                <apply>
                                    <divide/>
                                    <ci>tau_m_Kv2</ci>
                                    <cn cellml:units="millis_per_s">1000</cn>
                                </apply>
                            </apply>
                            <ci>phi_Kv2</ci>
                        </apply>
                        <ci>epsilon_tau</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>i_Kv2</ci>
                <apply>
                    <times/>
                    <ci>g_Kv2</ci>
                    <apply>
                        <minus/>
                        <ci>V</ci>
                        <ci>E_K</ci>
                    </apply>
                    <ci>m_Kv2</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>j_Kv2</ci>
                <apply>
                    <times/>
                    <apply>
                        <divide/>
                        <apply>
                            <minus/>
                            <ci>i_Kv2</ci>
                        </apply>
                        <ci>F</ci>
                    </apply>
                    <cn cellml:units="A_per_nanoA" type="e-notation">1<sep/>-9</cn>
                </apply>
            </apply>
        </math>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply><eq/><ci>g_Kv2</ci><apply><times/><ci>A_mem</ci><ci>rho_Kv2</ci><ci>gamma_Kv2</ci><cn cellml:units="microS_per_picoS" type="e-notation">1<sep/>-6</cn></apply></apply>
        </math>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>phi_Kv2</ci>
                <apply>
                    <power/>
                    <ci>Q10_Kv2</ci>
                    <apply>
                        <divide/>
                        <apply>
                            <minus/>
                            <ci>T</ci>
                            <ci>T_ref_Kv2</ci>
                        </apply>
                        <cn cellml:units="kelvin">10</cn>
                    </apply>
                </apply>
            </apply>
        </math>
    </component>
</model>
