def model mitochondrion_detailed_ArgusUNPUBLISHED_v01 as

  def comp mitochondrion_detailed as
    var t: second {pub: in};
    var R: J_per_mol_K {pub: in};
    var T: kelvin {pub: in};
    var F: C_per_mol {pub: in};
    var psi_m_init: volt {pub: in};
    // electrical potential of compartment m
    var psi_m: volt {init: psi_m_init, pub: out};
    // membrane capacitance per volume
    var C_m_m: F_per_m3 {pub: in};
    // charge moved into m (elementary charges)
    var I_m: millimolar_per_s {pub: out};
    // standard chemical potential of pyruvate (cytosol) (from the reactions' Gibbs energies, tools/bondgraph.py)
    var mu0_Pyr_c: J_per_mol {pub: in};
    var c_std_Pyr_c: millimolar {pub: in};
    // pyruvate (cytosol) in the cytosol (metabolite port)
    var C_Pyr_c: millimolar {pub: in};
    // net production of pyruvate (cytosol) here
    var j_Pyr_c: millimolar_per_s {pub: out};
    // standard chemical potential of phosphate (cytosol) (from the reactions' Gibbs energies, tools/bondgraph.py)
    var mu0_Pi_c: J_per_mol {pub: in};
    var c_std_Pi_c: millimolar {pub: in};
    // phosphate (cytosol) in the cytosol (metabolite port)
    var C_Pi_c: millimolar {pub: in};
    // net production of phosphate (cytosol) here
    var j_Pi_c: millimolar_per_s {pub: out};
    // standard chemical potential of H+ (cytosol and intermembrane space) (from the reactions' Gibbs energies, tools/bondgraph.py)
    var mu0_H_c: J_per_mol {pub: in};
    var c_std_H_c: millimolar {pub: in};
    // H+ (cytosol and intermembrane space) in the cytosol (metabolite port)
    var C_H_c: millimolar {pub: in};
    // net production of H+ (cytosol and intermembrane space) here
    var j_H_c: millimolar_per_s {pub: out};
    // standard chemical potential of ATP (cytosol) (from the reactions' Gibbs energies, tools/bondgraph.py)
    var mu0_ATP_c: J_per_mol {pub: in};
    var c_std_ATP_c: millimolar {pub: in};
    // ATP (cytosol) in the cytosol (metabolite port)
    var C_ATP_c: millimolar {pub: in};
    // net production of ATP (cytosol) here
    var j_ATP_c: millimolar_per_s {pub: out};
    // standard chemical potential of ADP (cytosol) (from the reactions' Gibbs energies, tools/bondgraph.py)
    var mu0_ADP_c: J_per_mol {pub: in};
    var c_std_ADP_c: millimolar {pub: in};
    // ADP (cytosol) in the cytosol (metabolite port)
    var C_ADP_c: millimolar {pub: in};
    // net production of ADP (cytosol) here
    var j_ADP_c: millimolar_per_s {pub: out};
    // standard chemical potential of O2 (from the reactions' Gibbs energies, tools/bondgraph.py)
    var mu0_O2: J_per_mol {pub: in};
    var c_std_O2: millimolar {pub: in};
    // O2 in the cytosol (metabolite port)
    var C_O2: millimolar {pub: in};
    // net production of O2 here
    var j_O2: millimolar_per_s {pub: out};
    // standard chemical potential of CO2 (from the reactions' Gibbs energies, tools/bondgraph.py)
    var mu0_CO2: J_per_mol {pub: in};
    var c_std_CO2: millimolar {pub: in};
    // CO2 in the cytosol (metabolite port)
    var C_CO2: millimolar {pub: in};
    // net production of CO2 here
    var j_CO2: millimolar_per_s {pub: out};
    // standard chemical potential of water (from the reactions' Gibbs energies, tools/bondgraph.py)
    var mu0_H2O: J_per_mol {pub: in};
    var c_std_H2O: millimolar {pub: in};
    // water in the cytosol (metabolite port)
    var C_H2O: millimolar {pub: in};
    // net production of water here
    var j_H2O: millimolar_per_s {pub: out};
    // standard chemical potential of H+ (matrix) (from the reactions' Gibbs energies, tools/bondgraph.py)
    var mu0_H_m: J_per_mol {pub: in};
    var c_std_H_m: millimolar {pub: in};
    // H+ (matrix) in the matrix, held by its buffers
    var C_H_m: millimolar {pub: in};
    // net production of H+ (matrix) here
    var j_H_m: millimolar_per_s {pub: out};
    // standard chemical potential of pyruvate (from the reactions' Gibbs energies, tools/bondgraph.py)
    var mu0_Pyr_m: J_per_mol {pub: in};
    var c_std_Pyr_m: millimolar {pub: in};
    var C_Pyr_m_init: millimolar {pub: in};
    // pyruvate
    var C_Pyr_m: millimolar {init: C_Pyr_m_init, pub: out};
    // standard chemical potential of acetyl-CoA (from the reactions' Gibbs energies, tools/bondgraph.py)
    var mu0_AcCoA: J_per_mol {pub: in};
    var c_std_AcCoA: millimolar {pub: in};
    var C_AcCoA_init: millimolar {pub: in};
    // acetyl-CoA
    var C_AcCoA: millimolar {init: C_AcCoA_init, pub: out};
    // standard chemical potential of coenzyme A (from the reactions' Gibbs energies, tools/bondgraph.py)
    var mu0_CoA: J_per_mol {pub: in};
    var c_std_CoA: millimolar {pub: in};
    var C_CoA_init: millimolar {pub: in};
    // coenzyme A
    var C_CoA: millimolar {init: C_CoA_init, pub: out};
    // standard chemical potential of citrate (from the reactions' Gibbs energies, tools/bondgraph.py)
    var mu0_Cit: J_per_mol {pub: in};
    var c_std_Cit: millimolar {pub: in};
    var C_Cit_init: millimolar {pub: in};
    // citrate
    var C_Cit: millimolar {init: C_Cit_init, pub: out};
    // standard chemical potential of isocitrate (from the reactions' Gibbs energies, tools/bondgraph.py)
    var mu0_Icit: J_per_mol {pub: in};
    var c_std_Icit: millimolar {pub: in};
    var C_Icit_init: millimolar {pub: in};
    // isocitrate
    var C_Icit: millimolar {init: C_Icit_init, pub: out};
    // standard chemical potential of 2-oxoglutarate (from the reactions' Gibbs energies, tools/bondgraph.py)
    var mu0_OG: J_per_mol {pub: in};
    var c_std_OG: millimolar {pub: in};
    var C_OG_init: millimolar {pub: in};
    // 2-oxoglutarate
    var C_OG: millimolar {init: C_OG_init, pub: out};
    // standard chemical potential of succinyl-CoA (from the reactions' Gibbs energies, tools/bondgraph.py)
    var mu0_SucCoA: J_per_mol {pub: in};
    var c_std_SucCoA: millimolar {pub: in};
    var C_SucCoA_init: millimolar {pub: in};
    // succinyl-CoA
    var C_SucCoA: millimolar {init: C_SucCoA_init, pub: out};
    // standard chemical potential of succinate (from the reactions' Gibbs energies, tools/bondgraph.py)
    var mu0_Suc: J_per_mol {pub: in};
    var c_std_Suc: millimolar {pub: in};
    var C_Suc_init: millimolar {pub: in};
    // succinate
    var C_Suc: millimolar {init: C_Suc_init, pub: out};
    // standard chemical potential of fumarate (from the reactions' Gibbs energies, tools/bondgraph.py)
    var mu0_Fum: J_per_mol {pub: in};
    var c_std_Fum: millimolar {pub: in};
    var C_Fum_init: millimolar {pub: in};
    // fumarate
    var C_Fum: millimolar {init: C_Fum_init, pub: out};
    // standard chemical potential of malate (from the reactions' Gibbs energies, tools/bondgraph.py)
    var mu0_Mal: J_per_mol {pub: in};
    var c_std_Mal: millimolar {pub: in};
    var C_Mal_init: millimolar {pub: in};
    // malate
    var C_Mal: millimolar {init: C_Mal_init, pub: out};
    // standard chemical potential of oxaloacetate (from the reactions' Gibbs energies, tools/bondgraph.py)
    var mu0_OAA: J_per_mol {pub: in};
    var c_std_OAA: millimolar {pub: in};
    var C_OAA_init: millimolar {pub: in};
    // oxaloacetate
    var C_OAA: millimolar {init: C_OAA_init, pub: out};
    // standard chemical potential of NAD+ (from the reactions' Gibbs energies, tools/bondgraph.py)
    var mu0_NAD_m: J_per_mol {pub: in};
    var c_std_NAD_m: millimolar {pub: in};
    var C_NAD_m_init: millimolar {pub: in};
    // NAD+
    var C_NAD_m: millimolar {init: C_NAD_m_init, pub: out};
    // standard chemical potential of NADH (from the reactions' Gibbs energies, tools/bondgraph.py)
    var mu0_NADH_m: J_per_mol {pub: in};
    var c_std_NADH_m: millimolar {pub: in};
    var C_NADH_m_init: millimolar {pub: in};
    // NADH
    var C_NADH_m: millimolar {init: C_NADH_m_init, pub: out};
    // standard chemical potential of ATP (matrix) (from the reactions' Gibbs energies, tools/bondgraph.py)
    var mu0_ATP_m: J_per_mol {pub: in};
    var c_std_ATP_m: millimolar {pub: in};
    var C_ATP_m_init: millimolar {pub: in};
    // ATP (matrix)
    var C_ATP_m: millimolar {init: C_ATP_m_init, pub: out};
    // standard chemical potential of ADP (matrix) (from the reactions' Gibbs energies, tools/bondgraph.py)
    var mu0_ADP_m: J_per_mol {pub: in};
    var c_std_ADP_m: millimolar {pub: in};
    var C_ADP_m_init: millimolar {pub: in};
    // ADP (matrix)
    var C_ADP_m: millimolar {init: C_ADP_m_init, pub: out};
    // standard chemical potential of phosphate (matrix) (from the reactions' Gibbs energies, tools/bondgraph.py)
    var mu0_Pi_m: J_per_mol {pub: in};
    var c_std_Pi_m: millimolar {pub: in};
    var C_Pi_m_init: millimolar {pub: in};
    // phosphate (matrix)
    var C_Pi_m: millimolar {init: C_Pi_m_init, pub: out};
    // standard chemical potential of ubiquinone (from the reactions' Gibbs energies, tools/bondgraph.py)
    var mu0_Q: J_per_mol {pub: in};
    var c_std_Q: millimolar {pub: in};
    var C_Q_init: millimolar {pub: in};
    // ubiquinone
    var C_Q: millimolar {init: C_Q_init, pub: out};
    // standard chemical potential of ubiquinol (from the reactions' Gibbs energies, tools/bondgraph.py)
    var mu0_QH2: J_per_mol {pub: in};
    var c_std_QH2: millimolar {pub: in};
    var C_QH2_init: millimolar {pub: in};
    // ubiquinol
    var C_QH2: millimolar {init: C_QH2_init, pub: out};
    // standard chemical potential of cytochrome c (oxidised) (from the reactions' Gibbs energies, tools/bondgraph.py)
    var mu0_cytc_ox: J_per_mol {pub: in};
    var c_std_cytc_ox: millimolar {pub: in};
    var C_cytc_ox_init: millimolar {pub: in};
    // cytochrome c (oxidised)
    var C_cytc_ox: millimolar {init: C_cytc_ox_init, pub: out};
    // standard chemical potential of cytochrome c (reduced) (from the reactions' Gibbs energies, tools/bondgraph.py)
    var mu0_cytc_red: J_per_mol {pub: in};
    var c_std_cytc_red: millimolar {pub: in};
    var C_cytc_red_init: millimolar {pub: in};
    // cytochrome c (reduced)
    var C_cytc_red: millimolar {init: C_cytc_red_init, pub: out};
    // mitochondrial pyruvate carrier (H+ symport): rate constant
    var kappa_PYRC: millimolar_per_s {pub: in};
    // exp(forward affinity / RT)
    var Pf_PYRC: dimensionless {pub: out};
    // exp(reverse affinity / RT)
    var Pr_PYRC: dimensionless {pub: out};
    // mitochondrial pyruvate carrier (H+ symport)
    var v_PYRC: millimolar_per_s {pub: out};
    // affinity: minus the reaction's Gibbs energy
    var A_PYRC: J_per_mol {pub: out};
    // phosphate carrier (HPO4 2- with 2 H+, electroneutral): rate constant
    var kappa_PIC: millimolar_per_s {pub: in};
    // exp(forward affinity / RT)
    var Pf_PIC: dimensionless {pub: out};
    // exp(reverse affinity / RT)
    var Pr_PIC: dimensionless {pub: out};
    // phosphate carrier (HPO4 2- with 2 H+, electroneutral)
    var v_PIC: millimolar_per_s {pub: out};
    // affinity: minus the reaction's Gibbs energy
    var A_PIC: J_per_mol {pub: out};
    // adenine nucleotide translocase (ATP4- out, ADP3- in): rate constant
    var kappa_ANT: millimolar_per_s {pub: in};
    // exp(forward affinity / RT)
    var Pf_ANT: dimensionless {pub: out};
    // exp(reverse affinity / RT)
    var Pr_ANT: dimensionless {pub: out};
    // adenine nucleotide translocase (ATP4- out, ADP3- in)
    var v_ANT: millimolar_per_s {pub: out};
    // affinity: minus the reaction's Gibbs energy
    var A_ANT: J_per_mol {pub: out};
    // saturation (half-saturated at Pf = sigma)
    var sigma_ANT: dimensionless {pub: in};
    // pyruvate dehydrogenase: rate constant
    var kappa_PDH: millimolar_per_s {pub: in};
    // exp(forward affinity / RT)
    var Pf_PDH: dimensionless {pub: out};
    // exp(reverse affinity / RT)
    var Pr_PDH: dimensionless {pub: out};
    // pyruvate dehydrogenase
    var v_PDH: millimolar_per_s {pub: out};
    // affinity: minus the reaction's Gibbs energy
    var A_PDH: J_per_mol {pub: out};
    // saturation (half-saturated at Pf = sigma)
    var sigma_PDH: dimensionless {pub: in};
    // citrate synthase: rate constant
    var kappa_CS: millimolar_per_s {pub: in};
    // exp(forward affinity / RT)
    var Pf_CS: dimensionless {pub: out};
    // exp(reverse affinity / RT)
    var Pr_CS: dimensionless {pub: out};
    // citrate synthase
    var v_CS: millimolar_per_s {pub: out};
    // affinity: minus the reaction's Gibbs energy
    var A_CS: J_per_mol {pub: out};
    // saturation (half-saturated at Pf = sigma)
    var sigma_CS: dimensionless {pub: in};
    // aconitase: rate constant
    var kappa_ACO: millimolar_per_s {pub: in};
    // exp(forward affinity / RT)
    var Pf_ACO: dimensionless {pub: out};
    // exp(reverse affinity / RT)
    var Pr_ACO: dimensionless {pub: out};
    // aconitase
    var v_ACO: millimolar_per_s {pub: out};
    // affinity: minus the reaction's Gibbs energy
    var A_ACO: J_per_mol {pub: out};
    // isocitrate dehydrogenase: rate constant
    var kappa_IDH: millimolar_per_s {pub: in};
    // exp(forward affinity / RT)
    var Pf_IDH: dimensionless {pub: out};
    // exp(reverse affinity / RT)
    var Pr_IDH: dimensionless {pub: out};
    // isocitrate dehydrogenase
    var v_IDH: millimolar_per_s {pub: out};
    // affinity: minus the reaction's Gibbs energy
    var A_IDH: J_per_mol {pub: out};
    // saturation (half-saturated at Pf = sigma)
    var sigma_IDH: dimensionless {pub: in};
    // 2-oxoglutarate dehydrogenase: rate constant
    var kappa_OGDH: millimolar_per_s {pub: in};
    // exp(forward affinity / RT)
    var Pf_OGDH: dimensionless {pub: out};
    // exp(reverse affinity / RT)
    var Pr_OGDH: dimensionless {pub: out};
    // 2-oxoglutarate dehydrogenase
    var v_OGDH: millimolar_per_s {pub: out};
    // affinity: minus the reaction's Gibbs energy
    var A_OGDH: J_per_mol {pub: out};
    // saturation (half-saturated at Pf = sigma)
    var sigma_OGDH: dimensionless {pub: in};
    // succinyl-CoA synthetase (ATP-forming, as E. coli SucCD): rate constant
    var kappa_SCS: millimolar_per_s {pub: in};
    // exp(forward affinity / RT)
    var Pf_SCS: dimensionless {pub: out};
    // exp(reverse affinity / RT)
    var Pr_SCS: dimensionless {pub: out};
    // succinyl-CoA synthetase (ATP-forming, as E. coli SucCD)
    var v_SCS: millimolar_per_s {pub: out};
    // affinity: minus the reaction's Gibbs energy
    var A_SCS: J_per_mol {pub: out};
    // saturation (half-saturated at Pf = sigma)
    var sigma_SCS: dimensionless {pub: in};
    // complex II (succinate:ubiquinone oxidoreductase): rate constant
    var kappa_CII: millimolar_per_s {pub: in};
    // exp(forward affinity / RT)
    var Pf_CII: dimensionless {pub: out};
    // exp(reverse affinity / RT)
    var Pr_CII: dimensionless {pub: out};
    // complex II (succinate:ubiquinone oxidoreductase)
    var v_CII: millimolar_per_s {pub: out};
    // affinity: minus the reaction's Gibbs energy
    var A_CII: J_per_mol {pub: out};
    // saturation (half-saturated at Pf = sigma)
    var sigma_CII: dimensionless {pub: in};
    // fumarase: rate constant
    var kappa_FUM: millimolar_per_s {pub: in};
    // exp(forward affinity / RT)
    var Pf_FUM: dimensionless {pub: out};
    // exp(reverse affinity / RT)
    var Pr_FUM: dimensionless {pub: out};
    // fumarase
    var v_FUM: millimolar_per_s {pub: out};
    // affinity: minus the reaction's Gibbs energy
    var A_FUM: J_per_mol {pub: out};
    // malate dehydrogenase: rate constant
    var kappa_MDH: millimolar_per_s {pub: in};
    // exp(forward affinity / RT)
    var Pf_MDH: dimensionless {pub: out};
    // exp(reverse affinity / RT)
    var Pr_MDH: dimensionless {pub: out};
    // malate dehydrogenase
    var v_MDH: millimolar_per_s {pub: out};
    // affinity: minus the reaction's Gibbs energy
    var A_MDH: J_per_mol {pub: out};
    // complex I (NADH:ubiquinone oxidoreductase, 4 H+ pumped): rate constant
    var kappa_CI: millimolar_per_s {pub: in};
    // exp(forward affinity / RT)
    var Pf_CI: dimensionless {pub: out};
    // exp(reverse affinity / RT)
    var Pr_CI: dimensionless {pub: out};
    // complex I (NADH:ubiquinone oxidoreductase, 4 H+ pumped)
    var v_CI: millimolar_per_s {pub: out};
    // affinity: minus the reaction's Gibbs energy
    var A_CI: J_per_mol {pub: out};
    // complex III (Q cycle: 4 H+ out, 2 taken up per QH2): rate constant
    var kappa_CIII: millimolar_per_s {pub: in};
    // exp(forward affinity / RT)
    var Pf_CIII: dimensionless {pub: out};
    // exp(reverse affinity / RT)
    var Pr_CIII: dimensionless {pub: out};
    // complex III (Q cycle: 4 H+ out, 2 taken up per QH2)
    var v_CIII: millimolar_per_s {pub: out};
    // affinity: minus the reaction's Gibbs energy
    var A_CIII: J_per_mol {pub: out};
    // saturation (half-saturated at Pf = sigma)
    var sigma_CIII: dimensionless {pub: in};
    // complex IV (cytochrome c oxidase, 4 H+ pumped per O2): rate constant
    var kappa_CIV: millimolar_per_s {pub: in};
    // exp(forward affinity / RT)
    var Pf_CIV: dimensionless {pub: out};
    // exp(reverse affinity / RT)
    var Pr_CIV: dimensionless {pub: out};
    // complex IV (cytochrome c oxidase, 4 H+ pumped per O2)
    var v_CIV: millimolar_per_s {pub: out};
    // affinity: minus the reaction's Gibbs energy
    var A_CIV: J_per_mol {pub: out};
    // saturation (half-saturated at Pf = sigma)
    var sigma_CIV: dimensionless {pub: in};
    // ATP synthase (3 H+ per ATP): rate constant
    var kappa_ATPS: millimolar_per_s {pub: in};
    // exp(forward affinity / RT)
    var Pf_ATPS: dimensionless {pub: out};
    // exp(reverse affinity / RT)
    var Pr_ATPS: dimensionless {pub: out};
    // ATP synthase (3 H+ per ATP)
    var v_ATPS: millimolar_per_s {pub: out};
    // affinity: minus the reaction's Gibbs energy
    var A_ATPS: J_per_mol {pub: out};
    // saturation (half-saturated at Pf = sigma)
    var sigma_ATPS: dimensionless {pub: in};
    // proton leak across the inner membrane: rate constant
    var kappa_LEAK: millimolar_per_s {pub: in};
    // exp(forward affinity / RT)
    var Pf_LEAK: dimensionless {pub: out};
    // exp(reverse affinity / RT)
    var Pr_LEAK: dimensionless {pub: out};
    // proton leak across the inner membrane
    var v_LEAK: millimolar_per_s {pub: out};
    // affinity: minus the reaction's Gibbs energy
    var A_LEAK: J_per_mol {pub: out};
    // free energy dissipated, sum v A (&gt;= 0, second law)
    var P_diss: W_per_m3 {pub: out};
    Pf_PYRC = exp(mu0_Pyr_c/(R*T))*C_Pyr_c/c_std_Pyr_c*(exp(mu0_H_c/(R*T))*C_H_c/c_std_H_c);
    Pr_PYRC = exp(mu0_Pyr_m/(R*T))*C_Pyr_m/c_std_Pyr_m*(exp(mu0_H_m/(R*T))*C_H_m/c_std_H_m);
    v_PYRC = kappa_PYRC*(Pf_PYRC-Pr_PYRC);
    A_PYRC = R*T*(ln(Pf_PYRC)-ln(Pr_PYRC));
    Pf_PIC = exp(mu0_Pi_c/(R*T))*C_Pi_c/c_std_Pi_c*sqr(exp(mu0_H_c/(R*T))*C_H_c/c_std_H_c);
    Pr_PIC = exp(mu0_Pi_m/(R*T))*C_Pi_m/c_std_Pi_m*sqr(exp(mu0_H_m/(R*T))*C_H_m/c_std_H_m);
    v_PIC = kappa_PIC*(Pf_PIC-Pr_PIC);
    A_PIC = R*T*(ln(Pf_PIC)-ln(Pr_PIC));
    Pf_ANT = exp(mu0_ATP_m/(R*T))*C_ATP_m/c_std_ATP_m*(exp(mu0_ADP_c/(R*T))*C_ADP_c/c_std_ADP_c)*exp(-0.5{dimensionless}*1.0{dimensionless}*F*psi_m/(R*T));
    Pr_ANT = exp(mu0_ATP_c/(R*T))*C_ATP_c/c_std_ATP_c*(exp(mu0_ADP_m/(R*T))*C_ADP_m/c_std_ADP_m)*exp(0.5{dimensionless}*1.0{dimensionless}*F*psi_m/(R*T));
    v_ANT = kappa_ANT*(Pf_ANT-Pr_ANT)/(1.0{dimensionless}+(Pf_ANT+Pr_ANT)/sigma_ANT);
    A_ANT = R*T*(ln(Pf_ANT)-ln(Pr_ANT));
    Pf_PDH = exp(mu0_Pyr_m/(R*T))*C_Pyr_m/c_std_Pyr_m*(exp(mu0_CoA/(R*T))*C_CoA/c_std_CoA)*(exp(mu0_NAD_m/(R*T))*C_NAD_m/c_std_NAD_m);
    Pr_PDH = exp(mu0_AcCoA/(R*T))*C_AcCoA/c_std_AcCoA*(exp(mu0_NADH_m/(R*T))*C_NADH_m/c_std_NADH_m)*(exp(mu0_CO2/(R*T))*C_CO2/c_std_CO2);
    v_PDH = kappa_PDH*(Pf_PDH-Pr_PDH)/(1.0{dimensionless}+(Pf_PDH+Pr_PDH)/sigma_PDH);
    A_PDH = R*T*(ln(Pf_PDH)-ln(Pr_PDH));
    Pf_CS = exp(mu0_OAA/(R*T))*C_OAA/c_std_OAA*(exp(mu0_AcCoA/(R*T))*C_AcCoA/c_std_AcCoA)*(exp(mu0_H2O/(R*T))*C_H2O/c_std_H2O);
    Pr_CS = exp(mu0_Cit/(R*T))*C_Cit/c_std_Cit*(exp(mu0_CoA/(R*T))*C_CoA/c_std_CoA)*(exp(mu0_H_m/(R*T))*C_H_m/c_std_H_m);
    v_CS = kappa_CS*(Pf_CS-Pr_CS)/(1.0{dimensionless}+(Pf_CS+Pr_CS)/sigma_CS);
    A_CS = R*T*(ln(Pf_CS)-ln(Pr_CS));
    Pf_ACO = exp(mu0_Cit/(R*T))*C_Cit/c_std_Cit;
    Pr_ACO = exp(mu0_Icit/(R*T))*C_Icit/c_std_Icit;
    v_ACO = kappa_ACO*(Pf_ACO-Pr_ACO);
    A_ACO = R*T*(ln(Pf_ACO)-ln(Pr_ACO));
    Pf_IDH = exp(mu0_Icit/(R*T))*C_Icit/c_std_Icit*(exp(mu0_NAD_m/(R*T))*C_NAD_m/c_std_NAD_m);
    Pr_IDH = exp(mu0_OG/(R*T))*C_OG/c_std_OG*(exp(mu0_NADH_m/(R*T))*C_NADH_m/c_std_NADH_m)*(exp(mu0_CO2/(R*T))*C_CO2/c_std_CO2);
    v_IDH = kappa_IDH*(Pf_IDH-Pr_IDH)/(1.0{dimensionless}+(Pf_IDH+Pr_IDH)/sigma_IDH);
    A_IDH = R*T*(ln(Pf_IDH)-ln(Pr_IDH));
    Pf_OGDH = exp(mu0_OG/(R*T))*C_OG/c_std_OG*(exp(mu0_CoA/(R*T))*C_CoA/c_std_CoA)*(exp(mu0_NAD_m/(R*T))*C_NAD_m/c_std_NAD_m);
    Pr_OGDH = exp(mu0_SucCoA/(R*T))*C_SucCoA/c_std_SucCoA*(exp(mu0_NADH_m/(R*T))*C_NADH_m/c_std_NADH_m)*(exp(mu0_CO2/(R*T))*C_CO2/c_std_CO2);
    v_OGDH = kappa_OGDH*(Pf_OGDH-Pr_OGDH)/(1.0{dimensionless}+(Pf_OGDH+Pr_OGDH)/sigma_OGDH);
    A_OGDH = R*T*(ln(Pf_OGDH)-ln(Pr_OGDH));
    Pf_SCS = exp(mu0_SucCoA/(R*T))*C_SucCoA/c_std_SucCoA*(exp(mu0_ADP_m/(R*T))*C_ADP_m/c_std_ADP_m)*(exp(mu0_Pi_m/(R*T))*C_Pi_m/c_std_Pi_m);
    Pr_SCS = exp(mu0_Suc/(R*T))*C_Suc/c_std_Suc*(exp(mu0_CoA/(R*T))*C_CoA/c_std_CoA)*(exp(mu0_ATP_m/(R*T))*C_ATP_m/c_std_ATP_m);
    v_SCS = kappa_SCS*(Pf_SCS-Pr_SCS)/(1.0{dimensionless}+(Pf_SCS+Pr_SCS)/sigma_SCS);
    A_SCS = R*T*(ln(Pf_SCS)-ln(Pr_SCS));
    Pf_CII = exp(mu0_Suc/(R*T))*C_Suc/c_std_Suc*(exp(mu0_Q/(R*T))*C_Q/c_std_Q);
    Pr_CII = exp(mu0_Fum/(R*T))*C_Fum/c_std_Fum*(exp(mu0_QH2/(R*T))*C_QH2/c_std_QH2);
    v_CII = kappa_CII*(Pf_CII-Pr_CII)/(1.0{dimensionless}+(Pf_CII+Pr_CII)/sigma_CII);
    A_CII = R*T*(ln(Pf_CII)-ln(Pr_CII));
    Pf_FUM = exp(mu0_Fum/(R*T))*C_Fum/c_std_Fum*(exp(mu0_H2O/(R*T))*C_H2O/c_std_H2O);
    Pr_FUM = exp(mu0_Mal/(R*T))*C_Mal/c_std_Mal;
    v_FUM = kappa_FUM*(Pf_FUM-Pr_FUM);
    A_FUM = R*T*(ln(Pf_FUM)-ln(Pr_FUM));
    Pf_MDH = exp(mu0_Mal/(R*T))*C_Mal/c_std_Mal*(exp(mu0_NAD_m/(R*T))*C_NAD_m/c_std_NAD_m);
    Pr_MDH = exp(mu0_OAA/(R*T))*C_OAA/c_std_OAA*(exp(mu0_NADH_m/(R*T))*C_NADH_m/c_std_NADH_m)*(exp(mu0_H_m/(R*T))*C_H_m/c_std_H_m);
    v_MDH = kappa_MDH*(Pf_MDH-Pr_MDH);
    A_MDH = R*T*(ln(Pf_MDH)-ln(Pr_MDH));
    Pf_CI = exp(mu0_NADH_m/(R*T))*C_NADH_m/c_std_NADH_m*(exp(mu0_Q/(R*T))*C_Q/c_std_Q)*pow(exp(mu0_H_m/(R*T))*C_H_m/c_std_H_m, 5.0{dimensionless})*exp(-0.5{dimensionless}*(-4.0{dimensionless})*F*psi_m/(R*T));
    Pr_CI = exp(mu0_NAD_m/(R*T))*C_NAD_m/c_std_NAD_m*(exp(mu0_QH2/(R*T))*C_QH2/c_std_QH2)*pow(exp(mu0_H_c/(R*T))*C_H_c/c_std_H_c, 4.0{dimensionless})*exp(0.5{dimensionless}*(-4.0{dimensionless})*F*psi_m/(R*T));
    v_CI = kappa_CI*(Pf_CI-Pr_CI);
    A_CI = R*T*(ln(Pf_CI)-ln(Pr_CI));
    Pf_CIII = exp(mu0_QH2/(R*T))*C_QH2/c_std_QH2*sqr(exp(mu0_cytc_ox/(R*T))*C_cytc_ox/c_std_cytc_ox)*sqr(exp(mu0_H_m/(R*T))*C_H_m/c_std_H_m)*exp(-0.5{dimensionless}*(-2.0{dimensionless})*F*psi_m/(R*T));
    Pr_CIII = exp(mu0_Q/(R*T))*C_Q/c_std_Q*sqr(exp(mu0_cytc_red/(R*T))*C_cytc_red/c_std_cytc_red)*pow(exp(mu0_H_c/(R*T))*C_H_c/c_std_H_c, 4.0{dimensionless})*exp(0.5{dimensionless}*(-2.0{dimensionless})*F*psi_m/(R*T));
    v_CIII = kappa_CIII*(Pf_CIII-Pr_CIII)/(1.0{dimensionless}+(Pf_CIII+Pr_CIII)/sigma_CIII);
    A_CIII = R*T*(ln(Pf_CIII)-ln(Pr_CIII));
    Pf_CIV = pow(exp(mu0_cytc_red/(R*T))*C_cytc_red/c_std_cytc_red, 4.0{dimensionless})*(exp(mu0_O2/(R*T))*C_O2/c_std_O2)*pow(exp(mu0_H_m/(R*T))*C_H_m/c_std_H_m, 8.0{dimensionless})*exp(-0.5{dimensionless}*(-8.0{dimensionless})*F*psi_m/(R*T));
    Pr_CIV = pow(exp(mu0_cytc_ox/(R*T))*C_cytc_ox/c_std_cytc_ox, 4.0{dimensionless})*sqr(exp(mu0_H2O/(R*T))*C_H2O/c_std_H2O)*pow(exp(mu0_H_c/(R*T))*C_H_c/c_std_H_c, 4.0{dimensionless})*exp(0.5{dimensionless}*(-8.0{dimensionless})*F*psi_m/(R*T));
    v_CIV = kappa_CIV*(Pf_CIV-Pr_CIV)/(1.0{dimensionless}+(Pf_CIV+Pr_CIV)/sigma_CIV);
    A_CIV = R*T*(ln(Pf_CIV)-ln(Pr_CIV));
    Pf_ATPS = exp(mu0_ADP_m/(R*T))*C_ADP_m/c_std_ADP_m*(exp(mu0_Pi_m/(R*T))*C_Pi_m/c_std_Pi_m)*pow(exp(mu0_H_c/(R*T))*C_H_c/c_std_H_c, 3.0{dimensionless})*exp(-0.5{dimensionless}*3.0{dimensionless}*F*psi_m/(R*T));
    Pr_ATPS = exp(mu0_ATP_m/(R*T))*C_ATP_m/c_std_ATP_m*(exp(mu0_H2O/(R*T))*C_H2O/c_std_H2O)*sqr(exp(mu0_H_m/(R*T))*C_H_m/c_std_H_m)*exp(0.5{dimensionless}*3.0{dimensionless}*F*psi_m/(R*T));
    v_ATPS = kappa_ATPS*(Pf_ATPS-Pr_ATPS)/(1.0{dimensionless}+(Pf_ATPS+Pr_ATPS)/sigma_ATPS);
    A_ATPS = R*T*(ln(Pf_ATPS)-ln(Pr_ATPS));
    Pf_LEAK = exp(mu0_H_c/(R*T))*C_H_c/c_std_H_c*exp(-0.5{dimensionless}*1.0{dimensionless}*F*psi_m/(R*T));
    Pr_LEAK = exp(mu0_H_m/(R*T))*C_H_m/c_std_H_m*exp(0.5{dimensionless}*1.0{dimensionless}*F*psi_m/(R*T));
    v_LEAK = kappa_LEAK*(Pf_LEAK-Pr_LEAK);
    A_LEAK = R*T*(ln(Pf_LEAK)-ln(Pr_LEAK));
    j_Pyr_c = -v_PYRC;
    j_Pi_c = -v_PIC;
    j_H_c = -v_PYRC-2.0{dimensionless}*v_PIC+4.0{dimensionless}*v_CI+4.0{dimensionless}*v_CIII+4.0{dimensionless}*v_CIV-3.0{dimensionless}*v_ATPS-v_LEAK;
    j_ATP_c = v_ANT;
    j_ADP_c = -v_ANT;
    j_O2 = -v_CIV;
    j_CO2 = v_PDH+v_IDH+v_OGDH;
    j_H2O = -v_CS-v_FUM+2.0{dimensionless}*v_CIV+v_ATPS;
    j_H_m = v_PYRC+2.0{dimensionless}*v_PIC+v_CS+v_MDH-5.0{dimensionless}*v_CI-2.0{dimensionless}*v_CIII-8.0{dimensionless}*v_CIV+2.0{dimensionless}*v_ATPS+v_LEAK;
    ode(C_Pyr_m, t) = v_PYRC-v_PDH;
    ode(C_AcCoA, t) = v_PDH-v_CS;
    ode(C_CoA, t) = -v_PDH+v_CS-v_OGDH+v_SCS;
    ode(C_Cit, t) = v_CS-v_ACO;
    ode(C_Icit, t) = v_ACO-v_IDH;
    ode(C_OG, t) = v_IDH-v_OGDH;
    ode(C_SucCoA, t) = v_OGDH-v_SCS;
    ode(C_Suc, t) = v_SCS-v_CII;
    ode(C_Fum, t) = v_CII-v_FUM;
    ode(C_Mal, t) = v_FUM-v_MDH;
    ode(C_OAA, t) = -v_CS+v_MDH;
    ode(C_NAD_m, t) = -v_PDH-v_IDH-v_OGDH-v_MDH+v_CI;
    ode(C_NADH_m, t) = v_PDH+v_IDH+v_OGDH+v_MDH-v_CI;
    ode(C_ATP_m, t) = -v_ANT+v_SCS+v_ATPS;
    ode(C_ADP_m, t) = v_ANT-v_SCS-v_ATPS;
    ode(C_Pi_m, t) = v_PIC-v_SCS-v_ATPS;
    ode(C_Q, t) = -v_CII-v_CI+v_CIII;
    ode(C_QH2, t) = v_CII+v_CI-v_CIII;
    ode(C_cytc_ox, t) = -2.0{dimensionless}*v_CIII+4.0{dimensionless}*v_CIV;
    ode(C_cytc_red, t) = 2.0{dimensionless}*v_CIII-4.0{dimensionless}*v_CIV;
    I_m = 1.0{dimensionless}*v_ANT+(-4.0{dimensionless}*v_CI)+(-2.0{dimensionless}*v_CIII)+(-8.0{dimensionless}*v_CIV)+3.0{dimensionless}*v_ATPS+1.0{dimensionless}*v_LEAK;
    ode(psi_m, t) = F*I_m/C_m_m;
    P_diss = v_PYRC*A_PYRC+v_PIC*A_PIC+v_ANT*A_ANT+v_PDH*A_PDH+v_CS*A_CS+v_ACO*A_ACO+v_IDH*A_IDH+v_OGDH*A_OGDH+v_SCS*A_SCS+v_CII*A_CII+v_FUM*A_FUM+v_MDH*A_MDH+v_CI*A_CI+v_CIII*A_CIII+v_CIV*A_CIV+v_ATPS*A_ATPS+v_LEAK*A_LEAK;
  enddef;
enddef;
