<?xml version='1.0' encoding='UTF-8'?>
<model name="NE_release_Tao_2011_nn" xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cellml="http://www.cellml.org/cellml/1.1#">
    <component name="NE_release_Tao_2011">
        <variable name="t" public_interface="in" units="second"/>
        <variable initial_value="0.0" name="V_Ca" public_interface="out" units="J_per_M"/>
        <variable initial_value="0.0" name="V_1Ca" public_interface="out" units="J_per_M"/>
        <variable initial_value="0.0" name="V_2Ca" public_interface="out" units="J_per_M"/>
        <variable initial_value="0.0" name="V_3Ca" public_interface="out" units="J_per_M"/>
        <variable initial_value="0.0" name="V_4Ca" public_interface="out" units="J_per_M"/>
        <variable initial_value="0.0" name="V_5Ca" public_interface="out" units="J_per_M"/>
        <variable initial_value="0.0" name="NE" public_interface="out" units="dimensionless"/>
        <variable name="K_off" public_interface="in" units="per_millis"/>
        <variable name="K_on" public_interface="in" units="m3_per_millimol_s"/>
        <variable name="K_Ca" public_interface="in" units="per_s"/>
        <variable name="b" public_interface="in" units="dimensionless"/>
        <variable name="E" public_interface="out" units="per_millis"/>
        <variable initial_value="0.0" name="Cai" public_interface="out" units="millimol_per_m3"/>
        <variable name="gamma" public_interface="in" units="m3_per_M_millis"/>
        <variable name="i_Ca" public_interface="in" units="nanoA"/>
        <variable name="C_m" public_interface="in" units="picoF"/>
        <variable name="F" public_interface="in" units="C_per_M"/>
        <variable name="V_Z" public_interface="in" units="litre"/>
        <variable name="a" public_interface="in" units="dimensionless"/>
        <variable name="n" public_interface="in" units="dimensionless"/>
        <variable name="V_cleft" public_interface="in" units="litre"/>
        <variable name="P_up" public_interface="in" units="per_millis"/>
        <!-- Intracellular concentration, input by Ca current, output with 
 a regulating time constant K_Ca.-->
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>Cai</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <divide/>
                        <apply>
                            <minus/>
                            <ci>i_Ca</ci>
                        </apply>
                        <apply>
                            <times/>
                            <cn cellml:units="dimensionless">2</cn>
                            <ci>F</ci>
                            <ci>V_Z</ci>
                            <cn cellml:units="dimensionless" type="e-notation">1<sep/>-6</cn>
                        </apply>
                    </apply>
                    <apply>
                        <times/>
                        <ci>Cai</ci>
                        <ci>K_Ca</ci>
                    </apply>
                </apply>
            </apply>
            <!-- Kinetics equations.-->
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>V_Ca</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <times/>
                        <ci>K_off</ci>
                        <ci>V_1Ca</ci>
                    </apply>
                    <apply>
                        <times/>
                        <cn cellml:units="dimensionless">5</cn>
                        <ci>K_on</ci>
                        <ci>Cai</ci>
                        <ci>V_Ca</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>V_1Ca</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <plus/>
                        <apply>
                            <times/>
                            <cn cellml:units="dimensionless">5</cn>
                            <ci>K_on</ci>
                            <ci>Cai</ci>
                            <ci>V_Ca</ci>
                        </apply>
                        <apply>
                            <times/>
                            <cn cellml:units="dimensionless">2</cn>
                            <ci>K_off</ci>
                            <ci>V_2Ca</ci>
                            <ci>b</ci>
                        </apply>
                    </apply>
                    <apply>
                        <times/>
                        <apply>
                            <plus/>
                            <apply>
                                <times/>
                                <ci>K_off</ci>
                                <ci>b</ci>
                            </apply>
                            <apply>
                                <times/>
                                <cn cellml:units="dimensionless">4</cn>
                                <ci>K_on</ci>
                                <ci>Cai</ci>
                            </apply>
                        </apply>
                        <ci>V_1Ca</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>V_2Ca</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <plus/>
                        <apply>
                            <times/>
                            <cn cellml:units="dimensionless">4</cn>
                            <ci>K_on</ci>
                            <ci>Cai</ci>
                            <ci>V_1Ca</ci>
                        </apply>
                        <apply>
                            <times/>
                            <cn cellml:units="dimensionless">3</cn>
                            <ci>K_off</ci>
                            <ci>V_3Ca</ci>
                            <apply>
                                <power/>
                                <ci>b</ci>
                                <cn cellml:units="dimensionless">2</cn>
                            </apply>
                        </apply>
                    </apply>
                    <apply>
                        <times/>
                        <apply>
                            <plus/>
                            <apply>
                                <times/>
                                <cn cellml:units="dimensionless">2</cn>
                                <ci>K_off</ci>
                                <ci>b</ci>
                            </apply>
                            <apply>
                                <times/>
                                <cn cellml:units="dimensionless">3</cn>
                                <ci>K_on</ci>
                                <ci>Cai</ci>
                            </apply>
                        </apply>
                        <ci>V_2Ca</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>V_3Ca</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <plus/>
                        <apply>
                            <times/>
                            <cn cellml:units="dimensionless">3</cn>
                            <ci>K_on</ci>
                            <ci>Cai</ci>
                            <ci>V_2Ca</ci>
                        </apply>
                        <apply>
                            <times/>
                            <cn cellml:units="dimensionless">4</cn>
                            <ci>K_off</ci>
                            <ci>V_4Ca</ci>
                            <apply>
                                <power/>
                                <ci>b</ci>
                                <cn cellml:units="dimensionless">3</cn>
                            </apply>
                        </apply>
                    </apply>
                    <apply>
                        <times/>
                        <apply>
                            <plus/>
                            <apply>
                                <times/>
                                <cn cellml:units="dimensionless">3</cn>
                                <ci>K_off</ci>
                                <apply>
                                    <power/>
                                    <ci>b</ci>
                                    <cn cellml:units="dimensionless">2</cn>
                                </apply>
                            </apply>
                            <apply>
                                <times/>
                                <cn cellml:units="dimensionless">2</cn>
                                <ci>K_on</ci>
                                <ci>Cai</ci>
                            </apply>
                        </apply>
                        <ci>V_3Ca</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>V_4Ca</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <plus/>
                        <apply>
                            <times/>
                            <cn cellml:units="dimensionless">2</cn>
                            <ci>K_on</ci>
                            <ci>Cai</ci>
                            <ci>V_3Ca</ci>
                        </apply>
                        <apply>
                            <times/>
                            <cn cellml:units="dimensionless">5</cn>
                            <ci>K_off</ci>
                            <ci>V_5Ca</ci>
                            <apply>
                                <power/>
                                <ci>b</ci>
                                <cn cellml:units="dimensionless">4</cn>
                            </apply>
                        </apply>
                    </apply>
                    <apply>
                        <times/>
                        <apply>
                            <plus/>
                            <apply>
                                <times/>
                                <cn cellml:units="dimensionless">4</cn>
                                <ci>K_off</ci>
                                <apply>
                                    <power/>
                                    <ci>b</ci>
                                    <cn cellml:units="dimensionless">3</cn>
                                </apply>
                            </apply>
                            <apply>
                                <times/>
                                <cn cellml:units="dimensionless">1</cn>
                                <ci>K_on</ci>
                                <ci>Cai</ci>
                            </apply>
                        </apply>
                        <ci>V_4Ca</ci>
                    </apply>
                </apply>
            </apply>
            <!-- I think the above V_2Ca should be V_5Ca... error in supp material of Tao 2011?-->
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>V_5Ca</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <times/>
                        <ci>K_on</ci>
                        <ci>Cai</ci>
                        <ci>V_4Ca</ci>
                    </apply>
                    <apply>
                        <times/>
                        <cn cellml:units="dimensionless">5</cn>
                        <ci>K_off</ci>
                        <apply>
                            <power/>
                            <ci>b</ci>
                            <cn cellml:units="dimensionless">4</cn>
                        </apply>
                        <ci>V_5Ca</ci>
                    </apply>
                </apply>
            </apply>
            <!-- Rate of diffusion for the released vesicles.-->
            <apply>
                <eq/>
                <ci>E</ci>
                <apply>
                    <times/>
                    <ci>gamma</ci>
                    <ci>V_5Ca</ci>
                </apply>
            </apply>
            <!-- NE in the cleft-->
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>NE</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <divide/>
                        <apply>
                            <times/>
                            <ci>E</ci>
                            <ci>n</ci>
                            <ci>a</ci>
                        </apply>
                        <ci>V_cleft</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>NE</ci>
                        <ci>P_up</ci>
                    </apply>
                </apply>
            </apply>
        </math>
    </component>
</model>
