<?xml version='1.0' encoding='UTF-8'?>
<model name="axon_sympathetic_monolithic_OLD" xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cellml="http://www.cellml.org/cellml/1.1#">
    <component name="SN_axon_OLD">
        <variable name="t" public_interface="in" units="second"/>
        <variable name="C" public_interface="in" units="picoF"/>
        <variable name="R" public_interface="in" units="megaOhm"/>
        <variable name="V_in" public_interface="in" units="milliV"/>
        <variable name="I" public_interface="out" units="nanoA"/>
        <variable name="V_rest_approx" public_interface="in" units="milliV"/>
        <variable initial_value="V_rest_approx" name="V" public_interface="out" units="milliV"/>
        <variable name="channel_ratio" public_interface="in" units="dimensionless"/>
        <variable name="I_channels" public_interface="out" units="nanoA"/>
        <!-- simple approximation of the extra input current that comes from ion channels in the axon membrane.
 channel_ratio should be a small value. it potentiates the current in the axon due to ion channel currents.
 Simple approximation.-->
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>I</ci>
                <apply>
                    <divide/>
                    <apply>
                        <minus/>
                        <ci>V_in</ci>
                        <ci>V</ci>
                    </apply>
                    <ci>R</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>I_channels</ci>
                <apply>
                    <times/>
                    <ci>I</ci>
                    <ci>channel_ratio</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>V</ci>
                </apply>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <cn cellml:units="milliV_per_kiloV" type="e-notation">1<sep/>6</cn>
                        <apply>
                            <plus/>
                            <ci>I</ci>
                            <ci>I_channels</ci>
                        </apply>
                    </apply>
                    <ci>C</ci>
                </apply>
            </apply>
        </math>
    </component>
</model>
