def model soma_sympathetic_monolithic_v01 as

  def comp SN_soma as
    var t: second {pub: in};
    // global constants
    var R: J_per_mol_K {pub: in};
    var F: C_per_mol {pub: in};
    var T: kelvin {pub: in};
    // c_ER is the ratio between ER volume and total volume.
    // The sub-membrane compartment (Ca concentration Cai) is a shell under the membrane, V_shell = A_mem d_shell,
    // exchanging with the bulk cytosol with time constant tau_shell (Khaliq et al. 2003, ModelDB 48332 cadiff.mod:
    // 0.1 um, 1 ms); the bulk is what is left of Vol, c_bulk = 1 - V_shell/Vol - c_ER - c_ER_pre.
    var c_ER_pre: dimensionless {pub: in};
    var k_A_ER: dimensionless {pub: in};
    var k_V_ER: dimensionless {pub: in};
    var k_A_ER_pre: dimensionless {pub: in};
    var k_V_ER_pre: dimensionless {pub: in};
    var A_ER: um2 {pub: out};
    var A_ER_pre: um2 {pub: out};
    var c_ER: dimensionless {pub: in};
    var d_shell: um {pub: in};
    var tau_shell: millis {pub: in};
    var V_shell: m3 {pub: out};
    var c_bulk: dimensionless {pub: out};
    c_bulk = 1{dimensionless}-V_shell/Vol-c_ER-c_ER_pre;
    var epsilon_tau: second {init: 1e-6};
    // this regions volume
    var Vol: m3 {pub: out};
    var c_m: uF_per_cm2 {pub: in};
    var d: um {pub: in};
    var k_A: dimensionless {pub: in};
    var k_V: dimensionless {pub: in};
    var A_mem: um2 {pub: out};
    // BC inputs
    var I_in: nanoA {pub: in};
    var I_out: nanoA {pub: in};
    // Nernst potentials (Calcium currently not needed, due to the form of the Ca_N equations)
    var E_K: milliV {pub: out};
    var E_Na: milliV {pub: out};
    var E_K_init: milliV {pub: out};
    var E_Na_init: milliV {pub: out};
    E_K = R*T/F*ln(Ko/Ki)*1000{milliV_per_V};
    E_Na = R*T/F*ln(Nao/Nai)*1000{milliV_per_V};
    E_K_init = R*T/F*ln(Ko/Ki_init)*1000{milliV_per_V};
    E_Na_init = R*T/F*ln(Nao/Nai_init)*1000{milliV_per_V};
    // E_Ca = R*T/F*ln(Cao/Cai)*1000{milliV_per_V};
    // voltage calculation
    // neuron capacitance
    var Cm: picoF {pub: out};
    var V_rest_approx: milliV {pub: in};
    var V: milliV {init: V_rest_approx, pub: out};
    ode(V, t) = -1e6{milliV_per_kiloV}*(i_Na+i_Na1_6+i_Ca_L+i_Kv2+i_Kv1_5+i_Kv4_2+i_KCa_BK+i_KCa_SK+i_M+i_NaCa+i_NaK+i_leak_Na+i_leak_K+(-I_in_delayed)+I_out)/Cm;
    // slightly delay the input
    var V_sensed: milliV {init: V_rest_approx, pub: out};
    var C_sensed: picoF {pub: in};
    ode(V_sensed, t) = 1e6{milliV_per_kiloV}*(I_in-I_in_delayed)/C_sensed;
    var I_in_delayed: nanoA {pub: out};
    var R_diffSensed: megaOhm {pub: in};
    I_in_delayed = (V_sensed-V)/R_diffSensed;
    // i_Na
    // Made V_mid_m a parameter (was 36 mV) to allow the modification of the depolarising voltage
    // made V_denm a parameter (was 7.2 mV) to allow the modification of the depolarising voltage activation amount during hyperpolarisation
    // threshold
    var i_Na: nanoA {pub: out};
    var g_Na: microS {pub: out};
    var rho_Na: per_um2 {pub: in};
    var gamma_Na: picoS {pub: in};
    var g_Na_mod: dimensionless {pub: in};
    var m_init: dimensionless {pub: out};
    var m: dimensionless {init: m_init, pub: out};
    var h_init: dimensionless {pub: out};
    var h: dimensionless {init: h_init, pub: out};
    // var j_init: dimensionless {pub: out};
    // var j: dimensionless {init: j_init, pub: out};
    var V_mid_m: milliV {pub: in};
    var V_den_m: milliV {pub: in};
    var V_mid_h: milliV {pub: in};
    var V_den_h: milliV {pub: in};
    // var V_mid_j: milliV {pub: in};
    // var V_den_j: milliV {pub: in};
    var m_inf: dimensionless {pub: out};
    var h_inf: dimensionless {pub: out};
    // var j_inf: dimensionless {pub: out};
    var tau_m: millis {pub: out};
    var tau_h: millis {pub: out};
    // var tau_j: millis {pub: out};
    var tau_h_min: millis {pub: in};
    var tau_h_max: millis {pub: in};
    // var tau_j_min: millis {pub: in};
    // var tau_j_max: millis {pub: in};
    // var Cai_I_Na_mid: millimolar {pub: in};
    // var Cai_I_Na_den: millimolar {pub: in};
    var k_thresh_m: milliV {pub: in};
    var k_thresh_h: milliV {pub: in};
    // dynamic threshold equation from platkiewicz2011Impact THIS WAS WRONG, REMOVE
    // V_mid_m = V_mid_m_max+k_thresh_m*log(h+0.01{dimensionless});
    // V_mid_h = V_mid_h_max+k_thresh_h*log(h+0.01{dimensionless});
    // Removed calcium dependance of Na channel. the changing threshold is probably due to inactivation causing a more positive threshold.
    // V_mid_m = V_mid_m_min+(V_mid_m_max-V_mid_m_min)/(1{dimensionless}+exp((Cai-Cai_I_Na_mid)/Cai_I_Na_den));
    // V_mid_h = V_mid_h_min+(V_mid_h_max-V_mid_h_min)/(1{dimensionless}+exp((Cai-Cai_I_Na_mid)/Cai_I_Na_den));
    m_init = 1{dimensionless}/(1{dimensionless}+exp(-(V_rest_approx+V_mid_m)/V_den_m));
    h_init = 1{dimensionless}/(1{dimensionless}+exp((V_rest_approx+V_mid_h)/V_den_h));
    // j_init = 1{dimensionless}/(1{dimensionless}+exp((V_rest_approx+V_mid_j)/V_den_j));
    m_inf = 1{dimensionless}/(1{dimensionless}+exp(-(V+V_mid_m)/V_den_m));
    h_inf = 1{dimensionless}/(1{dimensionless}+exp((V+V_mid_h)/V_den_h));
    // j_inf  = 1{dimensionless}/(1{dimensionless}+exp((V+V_mid_j)/V_den_j));
    // I changed tau_m so it is dependent on V_mid_h.
    // I have made sure it has the same maximum tau_m as in Beluzzi1991 easier to fit.
    // TODO Need to compare this to experimental data.
    // tau_m = 0.06{millis} + 1{dimensionless}/(42.98{per_millis}*exp(0.08915{per_milliV}*V)+0.9230{per_millis}*exp(-0.03351{per_milliV}*V));
    tau_m = 0.06{millis}+0.8{millis}/(exp((V_mid_m+10{milliV}+V)/10{milliV})+exp(-(V_mid_m+10{milliV}+V)/20{milliV}));
    // This tau_h equation has been modified. Make sure it is consistant with experimental data
    // I changed it to increase restitution period of the Na Channel, stays closed for longer after firing, and to simplify it.
    // tau_h     = tau_h_min+(tau_h_max-tau_h_min)/(1{dimensionless}+exp(-(V_mid_h+10{milliV}+V)/14{milliV})+exp((V_mid_h-20{milliV}+V)/1.556{milliV}));
    tau_h = tau_h_min+(tau_h_max-tau_h_min)/(1{dimensionless}+exp(-(V_mid_h+10{milliV}+V)/14{milliV})+exp((V_mid_h-20{milliV}+V)/2{milliV}));
    // tau_j     = tau_j_min+(tau_j_max-tau_j_min)/(1{dimensionless}+exp(-(V_mid_j+10{milliV}+V)/14{milliV})+exp((V_mid_j-20{milliV}+V)/2{milliV}));
    ode(m, t) = (m_inf-m)/(abs(tau_m/1000{millis_per_s})/phi_m_Na+epsilon_tau);
    ode(h, t) = (h_inf-h)/(abs(tau_h/1000{millis_per_s})/phi_h_Na+epsilon_tau);
    // ode(j, t) = (j_inf-j)/(abs(tau_j/1000{millis_per_s})+epsilon_tau);
    i_Na = g_Na*g_Na_mod*(V-E_Na)*pow(m, 3{dimensionless})*h;
    // i_Na_1_6 This is for the inititation of the AP
    var i_Na1_6: nanoA {pub: out};
    var g_Na1_6: microS {pub: out};
    var rho_Na1_6: per_um2 {pub: in};
    var gamma_Na1_6: picoS {pub: in};
    var g_Na1_6_mod: dimensionless {pub: in};
    var m_Na1_6_init: dimensionless {pub: out};
    var m_Na1_6: dimensionless {init: m_Na1_6_init, pub: out};
    var h_Na1_6_init: dimensionless {pub: out};
    var h_Na1_6: dimensionless {init: h_Na1_6_init, pub: out};
    var V_mid_m_Na1_6: milliV {pub: in};
    var V_den_m_Na1_6: milliV {pub: in};
    var V_mid_h_Na1_6: milliV {pub: in};
    var V_den_h_Na1_6: milliV {pub: in};
    var m_Na1_6_inf: dimensionless {pub: out};
    var h_Na1_6_inf: dimensionless {pub: out};
    var tau_m_Na1_6: millis {pub: out};
    var tau_h_Na1_6: millis {pub: out};
    var tau_h_Na1_6_min: millis {pub: in};
    var tau_h_Na1_6_max: millis {pub: in};
    m_Na1_6_init = 1{dimensionless}/(1{dimensionless}+exp(-(V_rest_approx+V_mid_m_Na1_6)/V_den_m_Na1_6));
    h_Na1_6_init = 1{dimensionless}/(1{dimensionless}+exp((V_rest_approx+V_mid_h_Na1_6)/V_den_h_Na1_6));
    // j_init = 1{dimensionless}/(1{dimensionless}+exp((V_rest_approx+V_mid_j)/V_den_j));
    m_Na1_6_inf = 1{dimensionless}/(1{dimensionless}+exp(-(V+V_mid_m_Na1_6)/V_den_m_Na1_6));
    h_Na1_6_inf = 1{dimensionless}/(1{dimensionless}+exp((V+V_mid_h_Na1_6)/V_den_h_Na1_6));
    tau_m_Na1_6 = 0.06{millis}+0.8{millis}/(exp((V_mid_m_Na1_6+10{milliV}+V)/10{milliV})+exp(-(V_mid_m_Na1_6+10{milliV}+V)/20{milliV}));
    tau_h_Na1_6 = tau_h_Na1_6_min+(tau_h_Na1_6_max-tau_h_Na1_6_min)/(1{dimensionless}+exp(-(V_mid_h_Na1_6+10{milliV}+V)/14{milliV})+exp((V_mid_h_Na1_6-20{milliV}+V)/2{milliV}));
    ode(m_Na1_6, t) = (m_Na1_6_inf-m_Na1_6)/(abs(tau_m_Na1_6/1000{millis_per_s})/phi_m_Na1_6+epsilon_tau);
    ode(h_Na1_6, t) = (h_Na1_6_inf-h_Na1_6)/(abs(tau_h_Na1_6/1000{millis_per_s})/phi_h_Na1_6+epsilon_tau);
    // ode(j, t) = (j_inf-j)/(abs(tau_j/1000{millis_per_s})+epsilon_tau);
    i_Na1_6 = g_Na1_6*g_Na1_6_mod*(V-E_Na)*pow(m_Na1_6, 3{dimensionless})*h_Na1_6;
    // I_Ca_L
    var i_Ca_L: nanoA {pub: out};
    var p_Ca: m3_per_s {pub: out};
    var rho_CaL: per_um2 {pub: in};
    var p_Ca_single: um3_per_s {pub: in};
    var c_init: dimensionless {pub: out};
    var c: dimensionless {init: c_init, pub: out};
    var hc_init: dimensionless {pub: out};
    var hc: dimensionless {init: hc_init, pub: out};
    var c_inf: dimensionless {pub: out};
    var hc_inf: dimensionless {pub: out};
    var tau_c: millis {pub: out};
    var tau_hc: millis {pub: in};
    var tau_c_min: millis {pub: in};
    var tau_c_max: millis {pub: in};
    var V_mid_c: milliV {pub: in};
    var V_den_c: milliV {pub: in};
    var V_mid_hc: milliV {pub: out};
    var V_den_hc: milliV {pub: out};
    V_mid_hc = V_mid_c+11{milliV};
    V_den_hc = V_den_c;
    c_init = 1{dimensionless}/(1{dimensionless}+exp(-(V_rest_approx+V_mid_c)/V_den_c));
    hc_init = 1{dimensionless}/(1{dimensionless}+exp((V_rest_approx+V_mid_hc)/V_den_hc));
    c_inf = 1{dimensionless}/(1{dimensionless}+exp(-(V+V_mid_c)/V_den_c));
    hc_inf = 1{dimensionless}/(1{dimensionless}+exp((V+V_mid_hc)/V_den_hc));
    // This has changed a lot from the Belluzi paper. Double check with Harvey's data.
    tau_c = tau_c_min+(tau_c_max-tau_c_min)/(1{dimensionless}+exp((V_mid_c-20{milliV}+V)/V_den_c));
    // +1{dimensionless}/(0.343{per_millis}*exp(0.0925{per_milliV}*V)+1.88{per_millis}*exp(-0.00732{per_milliV}*V));
    ode(c, t) = (c_inf-c)/(abs(tau_c/1000{millis_per_s})/phi_CaL+epsilon_tau);
    ode(hc, t) = (hc_inf-hc)/(abs(tau_hc/1000{millis_per_s})/phi_CaL+epsilon_tau);
    // TODO I have included a very rough cAMP inclusion here, improve this
    i_Ca_L = sel
      case abs(V) < 1e-6{milliV}:
        1e6{nanoA_per_milliA}*F*p_Ca*(1{dimensionless}+cAMP)*(Cai-Cao)/2e-3{V_per_milliV}*sqr(c)*hc;
      otherwise:
        1e6{nanoA_per_milliA}*sqr(F)*V*p_Ca*(1{dimensionless}+cAMP)/(R*T)*(Cai*exp(V*2e-3{V_per_milliV}*F/(R*T))-Cao)/(exp(V*2e-3{V_per_milliV}*F/(R*T))-1{dimensionless})*sqr(c)*hc;
    endsel;
    // I_Kv2 This is the delayed rectifier in the SN (See Davis2021 section 1.4.2.2)
    var i_Kv2: nanoA {pub: out};
    var g_Kv2: microS {pub: out};
    var rho_Kv2: per_um2 {pub: in};
    var gamma_Kv2: picoS {pub: in};
    var m_Kv2_init: dimensionless {pub: out};
    var m_Kv2: dimensionless {init: m_Kv2_init, pub: out};
    var m_Kv2_inf: dimensionless {pub: out};
    var tau_m_Kv2: millis {pub: out};
    var V_mid_m_Kv2: milliV {pub: in};
    var V_den_m_Kv2: milliV {pub: in};
    // these equations modified from Belucci but fit to the same data
    m_Kv2_init = 1{dimensionless}/(1{dimensionless}+exp(-(V_rest_approx+V_mid_m_Kv2)/V_den_m_Kv2));
    m_Kv2_inf = 1{dimensionless}/(1{dimensionless}+exp(-(V+V_mid_m_Kv2)/V_den_m_Kv2));
    tau_m_Kv2 = 2.31{millis}+45{millis}/(exp((V_mid_m_Kv2+V+10{milliV})/4{milliV})+exp(-(V_mid_m_Kv2+V+10{milliV})/4{milliV}));
    ode(m_Kv2, t) = (m_Kv2_inf-m_Kv2)/(abs(tau_m_Kv2/1000{millis_per_s})/phi_Kv2+epsilon_tau);
    i_Kv2 = g_Kv2*(V-E_K)*m_Kv2;
    // i_Kv1_5: Kv1.5 delayed-rectifier K current, slowly inactivating (tau_h of seconds); Channelpedia model 21 from Philipson 1991.
    var i_Kv1_5: nanoA {pub: out};
    var g_Kv1_5: microS {pub: out};
    var rho_Kv1_5: per_um2 {pub: in};
    var gamma_Kv1_5: picoS {pub: in};
    var m_Kv1_5_init: dimensionless {pub: out};
    var m_Kv1_5: dimensionless {init: m_Kv1_5_init, pub: out};
    var h_Kv1_5_init: dimensionless {pub: out};
    var h_Kv1_5: dimensionless {init: h_Kv1_5_init, pub: out};
    var m_Kv1_5_inf: dimensionless {pub: out};
    var h_Kv1_5_inf: dimensionless {pub: out};
    var tau_m_Kv1_5: millis {pub: out};
    var tau_h_Kv1_5: millis {pub: out};
    var V_mid_m_Kv1_5: milliV {pub: in};
    var V_den_m_Kv1_5: milliV {pub: in};
    var V_mid_h_Kv1_5: milliV {pub: in};
    var V_den_h_Kv1_5: milliV {pub: in};
    m_Kv1_5_init = 1{dimensionless}/(1{dimensionless}+exp(-(V_rest_approx+V_mid_m_Kv1_5)/V_den_m_Kv1_5));
    h_Kv1_5_init = 1{dimensionless}/(1{dimensionless}+exp((V_rest_approx+V_mid_h_Kv1_5)/V_den_h_Kv1_5));
    m_Kv1_5_inf = 1{dimensionless}/(1{dimensionless}+exp(-(V+V_mid_m_Kv1_5)/V_den_m_Kv1_5));
    h_Kv1_5_inf = 1{dimensionless}/(1{dimensionless}+exp((V+V_mid_h_Kv1_5)/V_den_h_Kv1_5));
    tau_m_Kv1_5 = sel
      case V < 50{mV}:
        -0.1163{millis_per_milliV}*V+8.33{millis};
      otherwise:
        2{millis};
    endsel;
    tau_h_Kv1_5 = sel
      case V < 100{mV}:
        -15.5{millis_per_milliV}*V+1620{millis};
      otherwise:
        50{millis};
    endsel;
    ode(m_Kv1_5, t) = (m_Kv1_5_inf-m_Kv1_5)/(abs(tau_m_Kv1_5/1000{millis_per_s})/phi_m_Kv1_5+epsilon_tau);
    ode(h_Kv1_5, t) = (h_Kv1_5_inf-h_Kv1_5)/(abs(tau_h_Kv1_5/1000{millis_per_s})/phi_h_Kv1_5+epsilon_tau);
    i_Kv1_5 = g_Kv1_5*m_Kv1_5*h_Kv1_5*(V-E_K);
    // i_Kv4_2. This is part of the A type current, the fast activating, fast inactivating current
    var i_Kv4_2: nanoA {pub: out};
    var g_Kv4_2: microS {pub: out};
    var rho_Kv4_2: per_um2 {pub: in};
    var gamma_Kv4_2: picoS {pub: in};
    var m_Kv4_2_init: dimensionless {pub: out};
    var m_Kv4_2: dimensionless {init: m_Kv4_2_init, pub: out};
    var h_Kv4_2_init: dimensionless {pub: out};
    var h_Kv4_2: dimensionless {init: h_Kv4_2_init, pub: out};
    var m_Kv4_2_inf: dimensionless {pub: out};
    var h_Kv4_2_inf: dimensionless {pub: out};
    var tau_m_Kv4_2: millis {pub: out};
    var tau_h_Kv4_2: millis {pub: in};
    var V_mid_m_Kv4_2: milliV {pub: in};
    var V_den_m_Kv4_2: milliV {pub: in};
    var V_mid_h_Kv4_2: milliV {pub: in};
    var V_den_h_Kv4_2: milliV {pub: in};
    m_Kv4_2_init = 1{dimensionless}/(1{dimensionless}+exp(-(V_rest_approx+V_mid_m_Kv4_2)/V_den_m_Kv4_2));
    h_Kv4_2_init = 1{dimensionless}/(1{dimensionless}+exp((V_rest_approx+V_mid_h_Kv4_2)/V_den_h_Kv4_2));
    m_Kv4_2_inf = 1{dimensionless}/(1{dimensionless}+exp(-(V+V_mid_m_Kv4_2)/V_den_m_Kv4_2));
    h_Kv4_2_inf = 1{dimensionless}/(1{dimensionless}+exp((V+V_mid_h_Kv4_2)/V_den_h_Kv4_2));
    // WAS
    // 1.0{millis}/(0.026{dimensionless}*exp(-0.026{per_milliV}*V)+35{dimensionless}*exp(0.136{per_milliV}*V));
    tau_m_Kv4_2 = sel
      case V < -50{mV}:
        1.0{millis}/(0.026{dimensionless}*exp(-0.026{per_milliV}*V)+35{dimensionless}*exp(0.136{per_milliV}*V));
      otherwise:
        1.7{millis}/(1{dimensionless}+exp((-42{milliV}-V)/(-26{milliV})))+0.34{millis};
    endsel;
    // WAS
    // tau_h_Kv4_2     = 0.01{millis_per_milliV}*V+6.7{millis};
    ode(m_Kv4_2, t) = (m_Kv4_2_inf-m_Kv4_2)/(abs(tau_m_Kv4_2/1000{millis_per_s})/phi_Kv4_2+epsilon_tau);
    ode(h_Kv4_2, t) = (h_Kv4_2_inf-h_Kv4_2)/(abs(tau_h_Kv4_2/1000{millis_per_s})/phi_Kv4_2+epsilon_tau);
    i_Kv4_2 = g_Kv4_2*pow(m_Kv4_2, 3{dimensionless})*h_Kv4_2*(V-E_K);
    // I_kCa_BK
    var g_KCa_BK: microS {pub: out};
    var rho_BK: per_um2 {pub: in};
    var gamma_BK: picoS {pub: in};
    var i_KCa_BK: nanoA {pub: out};
    var m_BK: dimensionless {init: m_BK_init, pub: out};
    var m_BK_inf: dimensionless {pub: out};
    var m_BK_init: dimensionless {pub: out};
    var h_BK_min: dimensionless {pub: in};
    var h_BK: dimensionless {init: h_BK_init, pub: out};
    var h_BK_inf: dimensionless {pub: out};
    var h_BK_init: dimensionless {pub: out};
    var z_BK: dimensionless {init: z_BK_init, pub: out};
    var z_BK_inf: dimensionless {pub: out};
    var z_BK_init: dimensionless {pub: out};
    var z_BK_coeff: millimolar {pub: in};
    var V_mid_m_BK: milliV {pub: out};
    var V_den_m_BK: milliV {pub: in};
    var V_mid_h_BK: milliV {pub: in};
    var V_den_h_BK: milliV {pub: in};
    var tau_m_BK: millis {pub: out};
    var tau_h_BK: millis {pub: out};
    var tau_z_BK: millis {pub: in};
    V_mid_m_BK = V_mid_h_BK-3.1{milliV};
    m_BK_init = 1{dimensionless}/(1{dimensionless}+exp(-(V_rest_approx+V_mid_m_BK)/V_den_m_BK));
    h_BK_init = h_BK_min+(1{dimensionless}-h_BK_min)/(1{dimensionless}+exp((V_rest_approx+V_mid_h_BK)/V_den_h_BK));
    z_BK_init = 1{dimensionless}/(1{dimensionless}+z_BK_coeff/Cai_init);
    m_BK_inf = 1{dimensionless}/(1{dimensionless}+exp(-(V+V_mid_m_BK)/V_den_m_BK));
    h_BK_inf = h_BK_min+(1{dimensionless}-h_BK_min)/(1{dimensionless}+exp((V+V_mid_h_BK)/V_den_h_BK));
    z_BK_inf = 1{dimensionless}/(1{dimensionless}+z_BK_coeff/Cai);
    // For z calculation, this is designed for Cai being simulated in a 100nm shell
    // underneath the membrane.
    // below tau_m min increase from 0.505 to 1.505 to allow for g_Na to not be instantly blocked.
    tau_m_BK = 1.505{millis}+1000{millis}/(exp((V+V_mid_m_BK+57.5{milliV})/10.1{milliV})+exp(-(V+V_mid_m_BK-62.2{milliV})/10{milliV}));
    tau_h_BK = 1.9{millis}+1000{millis}/(exp((V+V_mid_h_BK+16.5{milliV})/5.2{milliV})+exp(-(V+V_mid_h_BK-86.2{milliV})/12.9{milliV}));
    ode(m_BK, t) = (m_BK_inf-m_BK)/(abs(tau_m_BK/1000{millis_per_s})/phi_BK+epsilon_tau);
    ode(h_BK, t) = (h_BK_inf-h_BK)/(abs(tau_h_BK/1000{millis_per_s})/phi_BK+epsilon_tau);
    ode(z_BK, t) = (z_BK_inf-z_BK)/(abs(tau_z_BK/1000{millis_per_s})/phi_BK+epsilon_tau);
    i_KCa_BK = g_KCa_BK*pow(m_BK, 3{dimensionless})*h_BK*sqr(z_BK)*(V-E_K);
    // I_KCa_SK
    var i_KCa_SK: nanoA {pub: out};
    var g_KCa_SK: microS {pub: out};
    var rho_SK: per_um2 {pub: in};
    var gamma_SK: picoS {pub: in};
    var g_KCa_SK_mod: dimensionless {pub: in};
    var m_SK: dimensionless {init: m_SK_init, pub: out};
    var m_SK_inf: dimensionless {pub: out};
    var m_SK_init: dimensionless {pub: out};
    var tau_m_SK: millis {pub: in};
    var Ca_mid_m_SK: millimolar {pub: in};
    var p_SK: dimensionless {pub: in};
    m_SK_init = 1{dimensionless}/(1{dimensionless}+pow(Ca_mid_m_SK/Cai_init, p_SK));
    m_SK_inf = 1{dimensionless}/(1{dimensionless}+pow(Ca_mid_m_SK/Cai, p_SK));
    ode(m_SK, t) = (m_SK_inf-m_SK)/(tau_m_SK/1000{millis_per_s}/phi_SK);
    i_KCa_SK = g_KCa_SK*g_KCa_SK_mod*m_SK*(V-E_K);
    // I_M
    // TODO does this do some of the same things as iKv2 and iA, how do we differentiate these?
    // TODO calculate cAMP concentration
    // TODO figure out what units cAMP is supposed to have. is it between 0 and 1?
    var i_M: nanoA {pub: out};
    var g_M: microS {pub: out};
    var rho_M: per_um2 {pub: in};
    var gamma_M: picoS {pub: in};
    var g_M_mod: dimensionless {pub: in};
    var w_init: dimensionless {pub: out};
    var w: dimensionless {init: w_init, pub: out};
    var w_inf: dimensionless {pub: out};
    var cAMP: dimensionless {pub: in};
    var tau_w: millis {pub: out};
    var delta_gM: microS {pub: in};
    var tau_w_num: millis {pub: in};
    var V_mid_w: milliV {pub: in};
    var Delta_V_mid_w: milliV {pub: in};
    var V_den_w: milliV {pub: in};
    var tau_w_min: millis {pub: in};
    // var theta_w: milliV {pub: in};
    // var sigma_w: milliV {pub: in};
    // (from Golomb2006Contribution, pyramidal rat cells!!) z changed to w
    // w_inf = 1{dimensionless}/(1{dimensionless}+exp(-(V+39)/5));
    // tau_w = 75{millis};
    // cAMP = 0.0{millimolar};
    // (from Martin2023Modelling)
    w_init = 1{dimensionless}/(1{dimensionless}+exp(-(V_rest_approx+V_mid_w+Delta_V_mid_w)/V_den_w));
    w_inf = 1{dimensionless}/(1{dimensionless}+exp(-(V+V_mid_w+Delta_V_mid_w)/V_den_w));
    // tau_w = 400{millis}/(3.3{dimensionless}*exp((V+35{milliV})/10{milliV})+exp(-(V+35{milliV})/20{milliV}));
    // tau_w = tau_w_num/(3.3{dimensionless}*exp((V+V_mid_w)/20{milliV})+exp(-(V+V_mid_w)/30{milliV}));
    // below I slow down the increase.
    tau_w = tau_w_min+tau_w_num/(2.0{dimensionless}*exp((V+V_mid_w+Delta_V_mid_w)/15{milliV})+exp(-(V+V_mid_w+Delta_V_mid_w)/25{milliV}));
    // TODO I need to make sure tau doesn't go to zero so quickly when positive voltage, probably
    // by changing the 10 denominator to 20 or something similar. I HAVE CHANGED THIS, AND IT WORKS.
    // THIS HELPS CALIBRATE THE M-TYPE potassium channel!!
    // general i_M for Golomb and Martin
    ode(w, t) = (w_inf-w)/(tau_w/1000{millis_per_s}/phi_M);
    // This equation isn't correct for cAMP, m-type should still go to zero at small voltages
    i_M = g_M_mod*g_M*w*(V-E_K);
    // i_M = (g_M+cAMP*delta_gM)*w*(V-E_K);
    var i_leak_Na: nanoA {pub: out};
    var i_leak_K: nanoA {pub: out};
    var g_leak_Na: microS {pub: out};
    var rho_leak_Na: per_um2 {pub: in};
    var gamma_leak_Na: picoS {pub: in};
    var g_leak_K: microS {pub: out};
    var rho_leak_K: per_um2 {pub: in};
    var gamma_leak_K: picoS {pub: in};
    // Currently this changes as E_k and E_Na change...
    //  This assumes only currents at hyperpolarisation are leak currents, i_Nak, i_Na, and i_M, i_kCa_SK, and i_Kv2
    // g_leak_Na = max(-(i_leak_K_init+i_NaK_init+i_NaCa_init+i_M_init+i_KCa_SK_init+i_Kv2_init)/(V_rest_approx-E_Na_init), 0{microS});
    // currently leave out i_Na in case rest causes spiking
    i_leak_Na = g_leak_Na*(V-E_Na);
    i_leak_K = g_leak_K*(V-E_K);
    // i_HCN: This has been removed because not found in Wistar stellate SNs
    // var iHCN: nanoA {pub: out};
    // var g_HCN: microS {pub: in};
    // var delta_gHCN: dimensionless {pub: in};
    // var r_inf: dimensionless {pub: out};
    // var r_init: dimensionless {pub: in};
    // var r: dimensionless {init: r_init, pub: out};
    // var tau_r: millis {pub: out};
    // var eHCN: milliV {pub: in};
    // var alpha_r: dimensionless {pub: out};
    // var beta_r: dimensionless {pub: out};
    // var nu_cAMP: milliV {pub: in};
    // var cAMP: dimensionless {pub: in}; defined in M type block
    // nu_cAMP = 95{milliV}*cAMP+103.5{milliV}*(1{dimensionless}-cAMP);
    // TODO move the 0.007 to a variable infront of tau_r and remove it here.
    // alpha_r = 0.007{dimensionless}*exp(-(V+nu_cAMP)/19{milliV});
    // beta_r = 0.007{dimensionless}*exp((V+nu_cAMP)/22{milliV});
    // ode(r, t) = (r_inf-r)/(tau_r/1000{millis_per_s});
    // r_inf = alpha_r/(alpha_r+beta_r);
    // The below should have temperature dependence in the denominator, for now ignore it.
    // tau_r = 1{millis}/(alpha_r+beta_r);
    // iHCN = g_HCN*(1{dimensionless}+cAMP*delta_gHCN)*r*(V-eHCN);
    // NaCa pump. This is from Paci2013 model for a cardiomyocyte. Need to check that it behaves realistically for a neuron.
    // Why does it not have any time dynamics/delay??. Currently it happens way too quickly.
    var i_NaCa: nanoA {pub: out};
    var k_NaCa: nanoA {pub: out};
    var rho_NaCa: per_um2 {pub: in};
    var r_NaCa: per_s {pub: in};
    var alpha_NaCa: dimensionless {pub: in};
    var gamma_NaCa: dimensionless {pub: in};
    var Ksat: dimensionless {pub: in};
    var KmCa: millimolar {pub: in};
    var KmNai: millimolar {pub: in};
    i_NaCa = k_NaCa*(exp(gamma_NaCa*V*1e-3{V_per_milliV}*F/(R*T))*pow(Nai, 3{dimensionless})*Cao-exp((gamma_NaCa-1{dimensionless})*V*1e-3{V_per_milliV}*F/(R*T))*pow(Nao, 3{dimensionless})*Cai*alpha_NaCa)/((pow(KmNai, 3{dimensionless})+pow(Nao, 3{dimensionless}))*(KmCa+Cao)*(1{dimensionless}+Ksat*exp((gamma_NaCa-1{dimensionless})*V*1e-3{V_per_milliV}*F/(R*T))));
    // NaK pump from lindblad1996Model.
    // Note: This is for atrial cardiomyocytes.
    var i_NaK: nanoA {pub: out};
    // var i_NaK_part_init: nanoA {pub: out};
    var k_NaK: nanoA {pub: out};
    var rho_NaK: per_um2 {pub: in};
    var r_NaK: per_s {pub: in};
    var Nai_mid_NaK: millimolar {pub: in};
    var Ko_mid_NaK: millimolar {pub: in};
    var Nai_power_NaK: dimensionless {pub: in};
    i_NaK = k_NaK*(V+150{milliV})/(V+200{milliV})*1{dimensionless}/(1{dimensionless}+pow(Nai_mid_NaK/Nai, Nai_power_NaK))*Ko/(Ko+Ko_mid_NaK);
    // i_NaK_part_init = (V_rest_approx+150{milliV})/(V_rest_approx+200{milliV})*pow(Nai_init, Nai_power_NaK)/(pow(Nai_init, Nai_power_NaK)+pow(Nai_mid_NaK, Nai_power_NaK))*Ko/(Ko+Ko_mid_NaK);
    // Calculate Nak to ensure that the steady state Na is equal to Na_init
    // k_NaK = -(i_Na_init/3{dimensionless}+i_leak_Na_init/3{dimensionless}+i_NaCa_init)/i_NaK_part_init;
    // IP3 channel
    var j_IP3: mol_per_s {pub: out};
    var k_IP3: m3_per_s {pub: out};
    var rho_IP3R: per_um2 {pub: in};
    var k_IP3R_single: um3_per_s {pub: in};
    var k_leak_Ca: m3_per_s {pub: out};
    var rho_leak_Ca: per_um2 {pub: in};
    var k_leak_Ca_single: um3_per_s {pub: in};
    var m_IP3_inf: dimensionless {pub: out};
    var h_IP3_init: dimensionless {pub: in};
    var h_IP3: dimensionless {init: h_IP3_init, pub: out};
    var h_IP3_inf: dimensionless {pub: out};
    var tau_hIP3: millis {pub: out};
    var IP3: millimolar {pub: in};
    var a_2: per_millimolar_per_s {pub: in};
    var d_1: millimolar {pub: in};
    var d_2: millimolar {pub: in};
    var d_3: millimolar {pub: in};
    var d_5: millimolar {pub: in};
    var Q_2: millimolar {pub: out};
    m_IP3_inf = IP3/(IP3+d_1)*Cai/(Cai+d_5);
    Q_2 = d_2*(IP3+d_1)/(IP3+d_3);
    tau_hIP3 = 1000{millis_per_s}/(a_2*(Q_2+Cai));
    h_IP3_inf = Q_2/(Q_2+Cai);
    ode(h_IP3, t) = (h_IP3_inf-h_IP3)/(tau_hIP3/1000{millis_per_s}/phi_IP3R);
    j_IP3 = -k_IP3*pow(m_IP3_inf, 3{dimensionless})*pow(h_IP3, 3{dimensionless})*(Cai-Ca_ER);
    // leak current from Li1994Equations and equivalent to Shannon2004Mathematical
    var j_leak_Ca: mol_per_s {pub: out};
    j_leak_Ca = -k_leak_Ca*(Ca_bulk-Ca_ER_pre);
    // SR Ca pump from Shannon2004Mathematical but simplified
    var K_mf: millimolar {pub: in};
    var K_mr: millimolar {pub: in};
    var k_SERCA: mol_per_s {pub: out};
    var rho_SERCA: per_um2 {pub: in};
    var r_SERCA: per_s {pub: in};
    var H_SERCA: dimensionless {pub: in};
    var j_SERCA: mol_per_s {pub: out};
    j_SERCA = -k_SERCA*(pow(Ca_bulk/K_mf, H_SERCA)-pow(Ca_ER_pre/K_mr, H_SERCA))/(1{dimensionless}+pow(Ca_bulk/K_mf, H_SERCA)+pow(Ca_ER_pre/K_mr, H_SERCA));
    // Ryanodine receptor channel from Shannon et al.
    // var j_RyR: millimolar_per_s {pub: out};
    // var Rstate_init: dimensionless {pub: in};
    // var Ostate_init: dimensionless {pub: in};
    // var Istate_init: dimensionless {pub: in};
    // var RIstate_init: dimensionless {pub: in};
    // var Rstate: dimensionless {init: Rstate_init, pub: out};
    // var Ostate: dimensionless {init: Ostate_init, pub: out};
    // var Istate: dimensionless {init: Istate_init, pub: out};
    // var RIstate: dimensionless {init: RIstate_init, pub: out};
    // k_RyR is k_s in the paper
    // var k_RyR: per_s {pub: in};
    // var k_oCa: per_millimolar2_s {pub: in};
    // var k_om: per_s {pub: in};
    // var k_iCa: per_millimolar_s {pub: in};
    // var k_im: per_s {pub: in};
    // var k_RI_to_R: per_s {pub: in};
    // var EC_50ER: millimolar {pub: in};
    // var max_ER: dimensionless {pub: in};
    // var min_ER: dimensionless {pub: in};
    // var H_ER: dimensionless {pub: in};
    // var k_CaER: dimensionless {pub: out};
    // var k_oERCa: per_millimolar2_s {pub: out};
    // var k_iERCa: per_millimolar_s {pub: out};
    // k_CaER = max_ER-(max_ER-min_ER)/(1{dimensionless}+pow(EC_50ER/Ca_ER, H_ER));
    // k_oERCa = k_oCa/k_CaER;
    // k_iERCa = k_iCa*k_CaER;
    // ode(Rstate, t) = k_RI_to_R*RIstate-k_iERCa*Cai*Rstate-(k_oERCa*sqr(Cai)*Rstate-k_om*Ostate);
    // ode(Ostate, t) = k_oERCa*sqr(Cai)*Rstate-k_om*Ostate-(k_iERCa*Cai*Ostate-k_im*Istate);
    // ode(Istate, t) = k_iERCa*Cai*Ostate-k_im*Istate-(k_om*Istate-k_oERCa*sqr(Cai)*RIstate);
    // ode(RIstate, t) = k_om*Istate-k_oERCa*sqr(Cai)*RIstate-(k_RI_to_R*RIstate-k_iERCa*Cai*Rstate);
    // j_RyR = k_RyR*Ostate*(Ca_ER-Cai);
    // Ryanodine receptor model, developed by Finbar Argus
    var j_RyR: mol_per_s {pub: out};
    var k_RyR: m3_per_s {pub: out};
    var rho_RyR: per_um2 {pub: in};
    var k_RyR_single: um3_per_s {pub: in};
    var c_RyR_inf: dimensionless {pub: out};
    var hc_RyR_inf: dimensionless {pub: out};
    var c_RyR: dimensionless {init: 0.0, pub: out};
    var hc_RyR: dimensionless {init: 1.0, pub: out};
    var Cai_RyR_mid: millimolar {pub: in};
    var Cai_RyR_den: millimolar {pub: in};
    var Ca_ER_RyR_mid: millimolar {pub: in};
    var Ca_ER_RyR_den: millimolar {pub: in};
    var Ca_ER_RyR_tau_mid: millimolar {pub: in};
    var Ca_ER_RyR_tau_den: millimolar {pub: in};
    var tau_c_RyR: millis {pub: in};
    var tau_hc_RyR: millis {pub: in};
    // activated by Cai
    c_RyR_inf = 1{dimensionless}/(1{dimensionless}+exp(-(Cai-Cai_RyR_mid)/Cai_RyR_den));
    // deactivated by Ca_ER decreasing, so also activated by Ca_ER
    hc_RyR_inf = 1{dimensionless}/(1{dimensionless}+exp(-(Ca_ER-Ca_ER_RyR_mid)/Ca_ER_RyR_den));
    ode(c_RyR, t) = (c_RyR_inf-c_RyR)/(tau_c_RyR/1000{millis_per_s}/phi_RyR);
    // tau_hc_RyR = tau_hc_RyR_min; // + 200{millis}/(exp((Ca_ER-Ca_ER_RyR_tau_mid)/Ca_ER_RyR_tau_den)+exp(-(Ca_ER-Ca_ER_RyR_tau_mid)/Ca_ER_RyR_tau_den));
    ode(hc_RyR, t) = (hc_RyR_inf-hc_RyR)/(tau_hc_RyR/1000{millis_per_s}/phi_RyR);
    // TODO include cAMP dependence
    // TODO should it be c_RyR^3, to be more similar to
    j_RyR = k_RyR*(Ca_ER-Cai)*pow(c_RyR, 3{dimensionless})*pow(hc_RyR, 3{dimensionless});
    // Ca concentration calculations in each region
    var Cai_init: millimolar {pub: in};
    var Cai: millimolar {init: Cai_init, pub: out};
    var Ca_ER_init: millimolar {pub: in};
    var Ca_ER: millimolar {init: Ca_ER_init, pub: out};
    var Cao: millimolar {pub: in};
    var j_Ca_L: mol_per_s {pub: out};
    var j_NaCa_Ca: mol_per_s {pub: out};
    var Ca_bulk: millimolar {init: Cai_init, pub: out};
    var j_diffCa: mol_per_s {pub: out};
    var j_diffCa_ER: mol_per_s {pub: out};
    var D_Ca_ER: m3_per_s {pub: in};
    var Ca_ER_pre: millimolar {init: Ca_ER_init, pub: out};
    // Ca buffering parameters
    var B_Cai: millimolar {init: B_Ca_init, pub: out};
    var B_Ca_init: millimolar {pub: in};
    var B_Ca_total: millimolar {pub: in};
    var CaB_Cai: millimolar {pub: out};
    var B_Ca_bulk: millimolar {init: B_Ca_init, pub: out};
    var CaB_Ca_bulk: millimolar {pub: out};
    var B_Ca_ER_pre: millimolar {init: B_Ca_init, pub: out};
    var CaB_Ca_ER_pre: millimolar {pub: out};
    var k_bind_Ca: per_millimolar_s {pub: in};
    var k_unbind_Ca: per_s {pub: in};
    var k_bind_Ca_ER: per_millimolar_s {pub: in};
    var k_unbind_Ca_ER: per_s {pub: in};
    ode(B_Cai, t) = k_unbind_Ca*CaB_Cai-k_bind_Ca*Cai*B_Cai;
    CaB_Cai = B_Ca_total-B_Cai;
    ode(B_Ca_bulk, t) = k_unbind_Ca*CaB_Ca_bulk-k_bind_Ca*Ca_bulk*B_Ca_bulk;
    CaB_Ca_bulk = B_Ca_total-B_Ca_bulk;
    ode(B_Ca_ER_pre, t) = k_unbind_Ca_ER*CaB_Ca_ER_pre-k_bind_Ca_ER*Ca_ER_pre*B_Ca_ER_pre;
    CaB_Ca_ER_pre = B_Ca_total-B_Ca_ER_pre;
    j_Ca_L = -i_Ca_L/(2{dimensionless}*F)*1e-9{A_per_nanoA};
    j_NaCa_Ca = i_NaCa/F*1e-9{A_per_nanoA};
    j_diffCa = -(V_shell/(tau_shell/1000{millis_per_s}))*(Cai-Ca_bulk);
    j_diffCa_ER = D_Ca_ER*(Ca_ER_pre-Ca_ER);
    ode(Cai, t) = 1{dimensionless}/V_shell*(j_Ca_L+j_NaCa_Ca+j_IP3+j_RyR+j_diffCa)+k_unbind_Ca*CaB_Cai-k_bind_Ca*Cai*B_Cai;
    ode(Ca_bulk, t) = 1{dimensionless}/(Vol*c_bulk)*(j_SERCA-j_diffCa+j_leak_Ca)+k_unbind_Ca*CaB_Ca_bulk-k_bind_Ca*Ca_bulk*B_Ca_bulk;
    ode(Ca_ER_pre, t) = 1{dimensionless}/(Vol*c_ER_pre)*(-j_SERCA-j_leak_Ca-j_diffCa_ER)+k_unbind_Ca_ER*CaB_Ca_ER_pre-k_bind_Ca_ER*Ca_ER_pre*B_Ca_ER_pre;
    ode(Ca_ER, t) = 1{dimensionless}/(Vol*c_ER)*(-j_IP3-j_RyR+j_diffCa_ER);
    // Na concentration:
    var Nai_init: millimolar {pub: in};
    var Nai: millimolar {init: Nai_init, pub: out};
    var Nao: millimolar {pub: in};
    var j_Na: mol_per_s {pub: out};
    var j_Na1_6: mol_per_s {pub: out};
    var j_NaCa_Na: mol_per_s {pub: out};
    var j_NaK_Na: mol_per_s {pub: out};
    // var j_HCN_Na: mol_per_s {pub: out};
    var j_leak_Na: mol_per_s {pub: out};
    j_NaCa_Na = -3{dimensionless}*i_NaCa/F*1e-9{A_per_nanoA};
    j_NaK_Na = -3{dimensionless}*i_NaK/F*1e-9{A_per_nanoA};
    j_Na = -i_Na/F*1e-9{A_per_nanoA};
    j_Na1_6 = -i_Na1_6/F*1e-9{A_per_nanoA};
    // j_HCN_Na = max(-iHCN/F*1e-9{A_per_nanoA}, 0{mol_per_s});
    j_leak_Na = -i_leak_Na/F*1e-9{A_per_nanoA};
    ode(Nai, t) = (j_Na+j_Na1_6+j_NaCa_Na+j_NaK_Na+j_leak_Na)/Vol;
    // K concentration:
    var Ki_init: millimolar {pub: in};
    var Ki: millimolar {init: Ki_init, pub: out};
    var Ko: millimolar {pub: in};
    var j_Kv1_5: mol_per_s {pub: out};
    var j_Kv4_2: mol_per_s {pub: out};
    var j_Kv2: mol_per_s {pub: out};
    var j_KCa_BK: mol_per_s {pub: out};
    var j_KCa_SK: mol_per_s {pub: out};
    var j_KM: mol_per_s {pub: out};
    var j_NaK_K: mol_per_s {pub: out};
    // var j_HCN_k: mol_per_s {pub: out};
    var j_leak_K: mol_per_s {pub: out};
    // temperature scaling of the gating kinetics: every gating time constant is divided by phi = Q10^((T - T_ref)/10 K) (review 2026-10-05)
    var Q10_m_Na: dimensionless {pub: in};
    var Q10_h_Na: dimensionless {pub: in};
    var T_ref_Na: kelvin {pub: in};
    var phi_m_Na: dimensionless {pub: out};
    var phi_h_Na: dimensionless {pub: out};
    var Q10_m_Na1_6: dimensionless {pub: in};
    var Q10_h_Na1_6: dimensionless {pub: in};
    var T_ref_Na1_6: kelvin {pub: in};
    var phi_m_Na1_6: dimensionless {pub: out};
    var phi_h_Na1_6: dimensionless {pub: out};
    var Q10_CaL: dimensionless {pub: in};
    var T_ref_CaL: kelvin {pub: in};
    var phi_CaL: dimensionless {pub: out};
    var Q10_Kv2: dimensionless {pub: in};
    var T_ref_Kv2: kelvin {pub: in};
    var phi_Kv2: dimensionless {pub: out};
    var Q10_m_Kv1_5: dimensionless {pub: in};
    var Q10_h_Kv1_5: dimensionless {pub: in};
    var T_ref_Kv1_5: kelvin {pub: in};
    var phi_m_Kv1_5: dimensionless {pub: out};
    var phi_h_Kv1_5: dimensionless {pub: out};
    var Q10_Kv4_2: dimensionless {pub: in};
    var T_ref_Kv4_2: kelvin {pub: in};
    var phi_Kv4_2: dimensionless {pub: out};
    var Q10_BK: dimensionless {pub: in};
    var T_ref_BK: kelvin {pub: in};
    var phi_BK: dimensionless {pub: out};
    var Q10_SK: dimensionless {pub: in};
    var T_ref_SK: kelvin {pub: in};
    var phi_SK: dimensionless {pub: out};
    var Q10_M: dimensionless {pub: in};
    var T_ref_M: kelvin {pub: in};
    var phi_M: dimensionless {pub: out};
    var Q10_IP3R: dimensionless {pub: in};
    var T_ref_IP3R: kelvin {pub: in};
    var phi_IP3R: dimensionless {pub: out};
    var Q10_RyR: dimensionless {pub: in};
    var T_ref_RyR: kelvin {pub: in};
    var phi_RyR: dimensionless {pub: out};
    j_Kv1_5 = -i_Kv1_5/F*1e-9{A_per_nanoA};
    j_Kv4_2 = -i_Kv4_2/F*1e-9{A_per_nanoA};
    j_Kv2 = -i_Kv2/F*1e-9{A_per_nanoA};
    j_KCa_BK = -i_KCa_BK/F*1e-9{A_per_nanoA};
    j_KCa_SK = -i_KCa_SK/F*1e-9{A_per_nanoA};
    j_KM = -i_M/F*1e-9{A_per_nanoA};
    j_NaK_K = 2{dimensionless}*i_NaK/F*1e-9{A_per_nanoA};
    // j_HCN_k = -max(iHCN/F*1e-9{A_per_nanoA}, 0{mol_per_s});
    j_leak_K = -i_leak_K/F*1e-9{A_per_nanoA};
    ode(Ki, t) = (j_Kv1_5+j_Kv4_2+j_Kv2+j_KCa_BK+j_KCa_SK+j_KM+j_NaK_K+j_leak_K)/Vol;
    V_shell = A_mem*d_shell*1e-18{m3_per_um3};
    A_mem = k_A*sqr(d);
    Vol = k_V*pow(d, 3.0{dimensionless})*1e-18{m3_per_um3};
    Cm = c_m*A_mem*0.01{picoF_cm2_per_uF_um2};
    A_ER = k_A_ER*sqr(root(c_ER*Vol*1e18{um3_per_m3}/k_V_ER, 3.0{dimensionless}));
    A_ER_pre = k_A_ER_pre*sqr(root(c_ER_pre*Vol*1e18{um3_per_m3}/k_V_ER_pre, 3.0{dimensionless}));
    g_Na = A_mem*rho_Na*gamma_Na*1e-6{microS_per_picoS};
    g_Na1_6 = A_mem*rho_Na1_6*gamma_Na1_6*1e-6{microS_per_picoS};
    p_Ca = A_mem*rho_CaL*p_Ca_single*1e-18{m3_per_um3};
    g_Kv2 = A_mem*rho_Kv2*gamma_Kv2*1e-6{microS_per_picoS};
    g_Kv1_5 = A_mem*rho_Kv1_5*gamma_Kv1_5*1e-6{microS_per_picoS};
    g_Kv4_2 = A_mem*rho_Kv4_2*gamma_Kv4_2*1e-6{microS_per_picoS};
    g_KCa_BK = A_mem*rho_BK*gamma_BK*1e-6{microS_per_picoS};
    g_KCa_SK = A_mem*rho_SK*gamma_SK*1e-6{microS_per_picoS};
    g_M = A_mem*rho_M*gamma_M*1e-6{microS_per_picoS};
    k_NaCa = A_mem*rho_NaCa*r_NaCa*1.602176634e-10{nanoC};
    k_NaK = A_mem*rho_NaK*r_NaK*1.602176634e-10{nanoC};
    g_leak_Na = A_mem*rho_leak_Na*gamma_leak_Na*1e-6{microS_per_picoS};
    g_leak_K = A_mem*rho_leak_K*gamma_leak_K*1e-6{microS_per_picoS};
    k_IP3 = A_ER*rho_IP3R*k_IP3R_single*1e-18{m3_per_um3};
    k_RyR = A_ER*rho_RyR*k_RyR_single*1e-18{m3_per_um3};
    k_SERCA = A_ER_pre*rho_SERCA*r_SERCA/6.02214076e23{per_mol};
    k_leak_Ca = A_ER_pre*rho_leak_Ca*k_leak_Ca_single*1e-18{m3_per_um3};
    phi_m_Na = pow(Q10_m_Na, (T-T_ref_Na)/10{kelvin});
    phi_h_Na = pow(Q10_h_Na, (T-T_ref_Na)/10{kelvin});
    phi_m_Na1_6 = pow(Q10_m_Na1_6, (T-T_ref_Na1_6)/10{kelvin});
    phi_h_Na1_6 = pow(Q10_h_Na1_6, (T-T_ref_Na1_6)/10{kelvin});
    phi_CaL = pow(Q10_CaL, (T-T_ref_CaL)/10{kelvin});
    phi_Kv2 = pow(Q10_Kv2, (T-T_ref_Kv2)/10{kelvin});
    phi_m_Kv1_5 = pow(Q10_m_Kv1_5, (T-T_ref_Kv1_5)/10{kelvin});
    phi_h_Kv1_5 = pow(Q10_h_Kv1_5, (T-T_ref_Kv1_5)/10{kelvin});
    phi_Kv4_2 = pow(Q10_Kv4_2, (T-T_ref_Kv4_2)/10{kelvin});
    phi_BK = pow(Q10_BK, (T-T_ref_BK)/10{kelvin});
    phi_SK = pow(Q10_SK, (T-T_ref_SK)/10{kelvin});
    phi_M = pow(Q10_M, (T-T_ref_M)/10{kelvin});
    phi_IP3R = pow(Q10_IP3R, (T-T_ref_IP3R)/10{kelvin});
    phi_RyR = pow(Q10_RyR, (T-T_ref_RyR)/10{kelvin});
  enddef;
enddef;
