<?xml version='1.0' encoding='UTF-8'?>
<model name="varicosity_sympathetic_monolithic_OLD" xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cellml="http://www.cellml.org/cellml/1.1#">
    <component name="SN_varicosity_OLD">
        <variable name="t" public_interface="in" units="second"/>
        <!-- global constants-->
        <variable name="R" public_interface="in" units="J_per_mol_K"/>
        <variable name="F" public_interface="in" units="C_per_mol"/>
        <variable name="T" public_interface="in" units="kelvin"/>
        <!-- var a_cleft: dimensionless {pub: in};
 var n_cleft: dimensionless {pub: in};
 var Vol_cleft: litre {pub: in};-->
        <variable name="N_avo" public_interface="in" units="per_mol"/>
        <variable initial_value="1e-4" name="epsilon_tau" units="second"/>
        <!-- Vol of this lumped section. This is the volume of one varicosity.
 TODO should this be for a lumped compartment of multiple varicosities?
 TODO find out volume of extraceullular space and varicosities for specific tissue.-->
        <variable name="Vol" public_interface="in" units="m3"/>
        <!-- c_ER is the ratio between ER volume and total volume.
 c_SL is the ration between sub sarcolemmal volume and total volume.-->
        <variable name="c_ER_pre" public_interface="in" units="dimensionless"/>
        <variable name="c_ER" public_interface="in" units="dimensionless"/>
        <variable name="c_SL" public_interface="in" units="dimensionless"/>
        <variable name="c_bulk" public_interface="out" units="dimensionless"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>c_bulk</ci>
                <apply>
                    <minus/>
                    <apply>
                        <minus/>
                        <apply>
                            <minus/>
                            <cn cellml:units="dimensionless">1</cn>
                            <ci>c_SL</ci>
                        </apply>
                        <ci>c_ER</ci>
                    </apply>
                    <ci>c_ER_pre</ci>
                </apply>
            </apply>
        </math>
        <!--var Vol_ER: microm3 {pub: out};
Vol_ER = Vol*c_ER;-->
        <!-- BC inputs-->
        <!-- voltage is a BC from the soma currently-->
        <variable name="V" public_interface="in" units="milliV"/>
        <!-- Nernst potential -->
        <variable name="E_Ca" public_interface="out" units="milliV"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>E_Ca</ci>
                <apply>
                    <times/>
                    <apply>
                        <divide/>
                        <apply>
                            <times/>
                            <ci>R</ci>
                            <ci>T</ci>
                        </apply>
                        <apply>
                            <times/>
                            <cn cellml:units="dimensionless">2</cn>
                            <ci>F</ci>
                        </apply>
                    </apply>
                    <apply>
                        <ln/>
                        <apply>
                            <divide/>
                            <ci>Cao</ci>
                            <ci>Cai</ci>
                        </apply>
                    </apply>
                    <cn cellml:units="milliV_per_V">1000</cn>
                </apply>
            </apply>
        </math>
        <!-- cAMP: Not used currently-->
        <variable name="cAMP" public_interface="in" units="dimensionless"/>
        <!-- i_Na
 Made V_mid_m a parameter (was 36 mV) to allow the modification of the depolarising voltage
 made V_den_m a parameter (was 7.2 mV) to allow the modification of the depolarising voltage activation amount during hyperpolarisation
 threshold-->
        <!-- I_Ca_N: Created by Finbar Argus, fit to data from Huang1998-->
        <variable name="i_Ca_N" public_interface="out" units="nanoA"/>
        <variable name="g_CaN" public_interface="in" units="microS"/>
        <variable name="c_init" public_interface="in" units="dimensionless"/>
        <variable initial_value="c_init" name="c" public_interface="out" units="dimensionless"/>
        <variable name="hc_init" public_interface="in" units="dimensionless"/>
        <variable initial_value="hc_init" name="hc" public_interface="out" units="dimensionless"/>
        <variable name="c_inf" public_interface="out" units="dimensionless"/>
        <variable name="hc_inf" public_interface="out" units="dimensionless"/>
        <variable name="tau_c" public_interface="out" units="millis"/>
        <variable name="tau_hc" public_interface="in" units="millis"/>
        <variable name="tau_c_min" public_interface="in" units="millis"/>
        <variable name="tau_c_max" public_interface="in" units="millis"/>
        <variable name="V_mid_c" public_interface="in" units="milliV"/>
        <variable name="V_den_c" public_interface="in" units="milliV"/>
        <variable name="V_mid_hc" public_interface="out" units="milliV"/>
        <variable name="V_den_hc" public_interface="out" units="milliV"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>V_mid_hc</ci>
                <apply>
                    <plus/>
                    <ci>V_mid_c</ci>
                    <cn cellml:units="milliV">11</cn>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>V_den_hc</ci>
                <ci>V_den_c</ci>
            </apply>
            <apply>
                <eq/>
                <ci>c_inf</ci>
                <apply>
                    <divide/>
                    <cn cellml:units="dimensionless">1</cn>
                    <apply>
                        <plus/>
                        <cn cellml:units="dimensionless">1</cn>
                        <apply>
                            <exp/>
                            <apply>
                                <divide/>
                                <apply>
                                    <minus/>
                                    <apply>
                                        <plus/>
                                        <ci>V</ci>
                                        <ci>V_mid_c</ci>
                                    </apply>
                                </apply>
                                <ci>V_den_c</ci>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>hc_inf</ci>
                <apply>
                    <divide/>
                    <cn cellml:units="dimensionless">1</cn>
                    <apply>
                        <plus/>
                        <cn cellml:units="dimensionless">1</cn>
                        <apply>
                            <exp/>
                            <apply>
                                <divide/>
                                <apply>
                                    <plus/>
                                    <ci>V</ci>
                                    <ci>V_mid_hc</ci>
                                </apply>
                                <ci>V_den_hc</ci>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>tau_c</ci>
                <apply>
                    <plus/>
                    <ci>tau_c_min</ci>
                    <apply>
                        <divide/>
                        <apply>
                            <minus/>
                            <ci>tau_c_max</ci>
                            <ci>tau_c_min</ci>
                        </apply>
                        <apply>
                            <plus/>
                            <cn cellml:units="dimensionless">1</cn>
                            <apply>
                                <exp/>
                                <apply>
                                    <divide/>
                                    <apply>
                                        <plus/>
                                        <apply>
                                            <minus/>
                                            <ci>V_mid_c</ci>
                                            <cn cellml:units="milliV">20</cn>
                                        </apply>
                                        <ci>V</ci>
                                    </apply>
                                    <ci>V_den_c</ci>
                                </apply>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <!--+1{dimensionless}/(0.343{per_millis}*exp(0.0925{per_milliV}*V)+1.88{per_millis}*exp(-0.00732{per_milliV}*V));-->
            <!--+1{dimensionless}/(0.242{per_millis}*exp(0.145{per_milliV}*V)+0.0434{per_millis}*exp(-0.0201{per_milliV}*V));-->
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>c</ci>
                </apply>
                <apply>
                    <divide/>
                    <apply>
                        <minus/>
                        <ci>c_inf</ci>
                        <ci>c</ci>
                    </apply>
                    <apply>
                        <plus/>
                        <apply>
                            <abs/>
                            <apply>
                                <divide/>
                                <ci>tau_c</ci>
                                <cn cellml:units="millis_per_s">1000</cn>
                            </apply>
                        </apply>
                        <ci>epsilon_tau</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>hc</ci>
                </apply>
                <apply>
                    <divide/>
                    <apply>
                        <minus/>
                        <ci>hc_inf</ci>
                        <ci>hc</ci>
                    </apply>
                    <apply>
                        <plus/>
                        <apply>
                            <abs/>
                            <apply>
                                <divide/>
                                <ci>tau_hc</ci>
                                <cn cellml:units="millis_per_s">1000</cn>
                            </apply>
                        </apply>
                        <ci>epsilon_tau</ci>
                    </apply>
                </apply>
            </apply>
            <!-- TODO Include cAMP effects?-->
            <apply>
                <eq/>
                <ci>i_Ca_N</ci>
                <apply>
                    <times/>
                    <ci>g_CaN</ci>
                    <apply>
                        <minus/>
                        <ci>V</ci>
                        <ci>E_Ca</ci>
                    </apply>
                    <apply>
                        <power/>
                        <ci>c</ci>
                        <cn cellml:units="dimensionless">2</cn>
                    </apply>
                    <ci>hc</ci>
                </apply>
            </apply>
        </math>
        <!-- NaCa pump. This is from Paci2013 model for a cardiomyocyte. Need to check that it behaves realistically for a neuron.
 Why does it not have any time dynamics/delay??. Currently it happens way too quickly.-->
        <variable name="Nai" public_interface="in" units="millimolar"/>
        <variable name="Nao" public_interface="in" units="millimolar"/>
        <variable name="i_NaCa" public_interface="out" units="nanoA"/>
        <variable name="k_NaCa" public_interface="in" units="nanoA"/>
        <variable name="alpha_NaCa" public_interface="in" units="dimensionless"/>
        <variable name="gamma_NaCa" public_interface="in" units="dimensionless"/>
        <variable name="Ksat" public_interface="in" units="dimensionless"/>
        <variable name="KmCa" public_interface="in" units="millimolar"/>
        <variable name="KmNai" public_interface="in" units="millimolar"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>i_NaCa</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <ci>k_NaCa</ci>
                        <apply>
                            <minus/>
                            <apply>
                                <times/>
                                <apply>
                                    <exp/>
                                    <apply>
                                        <divide/>
                                        <apply>
                                            <times/>
                                            <ci>gamma_NaCa</ci>
                                            <ci>V</ci>
                                            <cn cellml:units="V_per_milliV" type="e-notation">1<sep/>-3</cn>
                                            <ci>F</ci>
                                        </apply>
                                        <apply>
                                            <times/>
                                            <ci>R</ci>
                                            <ci>T</ci>
                                        </apply>
                                    </apply>
                                </apply>
                                <apply>
                                    <power/>
                                    <ci>Nai</ci>
                                    <cn cellml:units="dimensionless">3</cn>
                                </apply>
                                <ci>Cao</ci>
                            </apply>
                            <apply>
                                <times/>
                                <apply>
                                    <exp/>
                                    <apply>
                                        <divide/>
                                        <apply>
                                            <times/>
                                            <apply>
                                                <minus/>
                                                <ci>gamma_NaCa</ci>
                                                <cn cellml:units="dimensionless">1</cn>
                                            </apply>
                                            <ci>V</ci>
                                            <cn cellml:units="V_per_milliV" type="e-notation">1<sep/>-3</cn>
                                            <ci>F</ci>
                                        </apply>
                                        <apply>
                                            <times/>
                                            <ci>R</ci>
                                            <ci>T</ci>
                                        </apply>
                                    </apply>
                                </apply>
                                <apply>
                                    <power/>
                                    <ci>Nao</ci>
                                    <cn cellml:units="dimensionless">3</cn>
                                </apply>
                                <ci>Cai</ci>
                                <ci>alpha_NaCa</ci>
                            </apply>
                        </apply>
                    </apply>
                    <apply>
                        <times/>
                        <apply>
                            <plus/>
                            <apply>
                                <power/>
                                <ci>KmNai</ci>
                                <cn cellml:units="dimensionless">3</cn>
                            </apply>
                            <apply>
                                <power/>
                                <ci>Nao</ci>
                                <cn cellml:units="dimensionless">3</cn>
                            </apply>
                        </apply>
                        <apply>
                            <plus/>
                            <ci>KmCa</ci>
                            <ci>Cao</ci>
                        </apply>
                        <apply>
                            <plus/>
                            <cn cellml:units="dimensionless">1</cn>
                            <apply>
                                <times/>
                                <ci>Ksat</ci>
                                <apply>
                                    <exp/>
                                    <apply>
                                        <divide/>
                                        <apply>
                                            <times/>
                                            <apply>
                                                <minus/>
                                                <ci>gamma_NaCa</ci>
                                                <cn cellml:units="dimensionless">1</cn>
                                            </apply>
                                            <ci>V</ci>
                                            <cn cellml:units="V_per_milliV" type="e-notation">1<sep/>-3</cn>
                                            <ci>F</ci>
                                        </apply>
                                        <apply>
                                            <times/>
                                            <ci>R</ci>
                                            <ci>T</ci>
                                        </apply>
                                    </apply>
                                </apply>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
        </math>
        <!-- IP3 channel-->
        <variable name="j_IP3" public_interface="out" units="mol_per_s"/>
        <variable name="k_IP3" public_interface="in" units="m3_per_s"/>
        <variable name="k_leak_Ca" public_interface="in" units="m3_per_s"/>
        <variable name="m_IP3_inf" public_interface="out" units="dimensionless"/>
        <variable name="h_IP3_init" public_interface="in" units="dimensionless"/>
        <variable initial_value="h_IP3_init" name="h_IP3" public_interface="out" units="dimensionless"/>
        <variable name="h_IP3_inf" public_interface="out" units="dimensionless"/>
        <variable name="tau_hIP3" public_interface="out" units="millis"/>
        <variable name="IP3" public_interface="in" units="millimolar"/>
        <variable name="a_2" public_interface="in" units="per_millimolar"/>
        <variable name="d_1" public_interface="in" units="millimolar"/>
        <variable name="d_2" public_interface="in" units="millimolar"/>
        <variable name="d_3" public_interface="in" units="millimolar"/>
        <variable name="d_5" public_interface="in" units="millimolar"/>
        <variable name="Q_2" public_interface="out" units="millimolar"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>m_IP3_inf</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <apply>
                            <divide/>
                            <ci>IP3</ci>
                            <apply>
                                <plus/>
                                <ci>IP3</ci>
                                <ci>d_1</ci>
                            </apply>
                        </apply>
                        <ci>Cai</ci>
                    </apply>
                    <apply>
                        <plus/>
                        <ci>Cai</ci>
                        <ci>d_5</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>Q_2</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <ci>d_2</ci>
                        <apply>
                            <plus/>
                            <ci>IP3</ci>
                            <ci>d_1</ci>
                        </apply>
                    </apply>
                    <apply>
                        <plus/>
                        <ci>IP3</ci>
                        <ci>d_3</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>tau_hIP3</ci>
                <apply>
                    <divide/>
                    <cn cellml:units="millis">1</cn>
                    <apply>
                        <times/>
                        <ci>a_2</ci>
                        <apply>
                            <plus/>
                            <ci>Q_2</ci>
                            <ci>Cai</ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>h_IP3_inf</ci>
                <apply>
                    <divide/>
                    <ci>Q_2</ci>
                    <apply>
                        <plus/>
                        <ci>Q_2</ci>
                        <ci>Cai</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>h_IP3</ci>
                </apply>
                <apply>
                    <divide/>
                    <apply>
                        <minus/>
                        <ci>h_IP3_inf</ci>
                        <ci>h_IP3</ci>
                    </apply>
                    <apply>
                        <divide/>
                        <ci>tau_hIP3</ci>
                        <cn cellml:units="millis_per_s">1000</cn>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>j_IP3</ci>
                <apply>
                    <times/>
                    <apply>
                        <minus/>
                        <ci>k_IP3</ci>
                    </apply>
                    <apply>
                        <power/>
                        <ci>m_IP3_inf</ci>
                        <cn cellml:units="dimensionless">3</cn>
                    </apply>
                    <apply>
                        <power/>
                        <ci>h_IP3</ci>
                        <cn cellml:units="dimensionless">3</cn>
                    </apply>
                    <apply>
                        <minus/>
                        <ci>Cai</ci>
                        <ci>Ca_ER</ci>
                    </apply>
                </apply>
            </apply>
        </math>
        <!-- leak current from Li1994Equations and equivalent to Shannon2004Mathematical-->
        <variable name="j_leak_Ca" public_interface="out" units="mol_per_s"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>j_leak_Ca</ci>
                <apply>
                    <times/>
                    <apply>
                        <minus/>
                        <ci>k_leak_Ca</ci>
                    </apply>
                    <apply>
                        <minus/>
                        <ci>Ca_bulk</ci>
                        <ci>Ca_ER_pre</ci>
                    </apply>
                </apply>
            </apply>
        </math>
        <!-- SR Ca pump from Shannon2004Mathematical but simplified-->
        <variable name="K_mf" public_interface="in" units="millimolar"/>
        <variable name="K_mr" public_interface="in" units="millimolar"/>
        <variable name="k_SERCA" public_interface="in" units="mol_per_s"/>
        <variable name="H_SERCA" public_interface="in" units="dimensionless"/>
        <variable name="j_SERCA" public_interface="out" units="mol_per_s"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>j_SERCA</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <apply>
                            <minus/>
                            <ci>k_SERCA</ci>
                        </apply>
                        <apply>
                            <minus/>
                            <apply>
                                <power/>
                                <apply>
                                    <divide/>
                                    <ci>Ca_bulk</ci>
                                    <ci>K_mf</ci>
                                </apply>
                                <ci>H_SERCA</ci>
                            </apply>
                            <apply>
                                <power/>
                                <apply>
                                    <divide/>
                                    <ci>Ca_ER_pre</ci>
                                    <ci>K_mr</ci>
                                </apply>
                                <ci>H_SERCA</ci>
                            </apply>
                        </apply>
                    </apply>
                    <apply>
                        <plus/>
                        <cn cellml:units="dimensionless">1</cn>
                        <apply>
                            <power/>
                            <apply>
                                <divide/>
                                <ci>Ca_bulk</ci>
                                <ci>K_mf</ci>
                            </apply>
                            <ci>H_SERCA</ci>
                        </apply>
                        <apply>
                            <power/>
                            <apply>
                                <divide/>
                                <ci>Ca_ER_pre</ci>
                                <ci>K_mr</ci>
                            </apply>
                            <ci>H_SERCA</ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
        </math>
        <!-- Ryanodine receptor model, developed by Finbar Argus-->
        <variable name="j_RyR" public_interface="out" units="mol_per_s"/>
        <variable name="k_RyR" public_interface="in" units="m3_per_s"/>
        <variable name="c_RyR_inf" public_interface="out" units="dimensionless"/>
        <variable name="hc_RyR_inf" public_interface="out" units="dimensionless"/>
        <variable initial_value="0.0" name="c_RyR" public_interface="out" units="dimensionless"/>
        <variable initial_value="1.0" name="hc_RyR" public_interface="out" units="dimensionless"/>
        <variable name="Cai_RyR_mid" public_interface="in" units="millimolar"/>
        <variable name="Cai_RyR_den" public_interface="in" units="millimolar"/>
        <variable name="Ca_ER_RyR_mid" public_interface="in" units="millimolar"/>
        <variable name="Ca_ER_RyR_den" public_interface="in" units="millimolar"/>
        <variable name="Ca_ER_RyR_tau_mid" public_interface="in" units="millimolar"/>
        <variable name="Ca_ER_RyR_tau_den" public_interface="in" units="millimolar"/>
        <variable name="tau_c_RyR" public_interface="in" units="millis"/>
        <variable name="tau_hc_RyR" public_interface="in" units="millis"/>
        <!-- activated by Cai-->
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>c_RyR_inf</ci>
                <apply>
                    <divide/>
                    <cn cellml:units="dimensionless">1</cn>
                    <apply>
                        <plus/>
                        <cn cellml:units="dimensionless">1</cn>
                        <apply>
                            <exp/>
                            <apply>
                                <divide/>
                                <apply>
                                    <minus/>
                                    <apply>
                                        <minus/>
                                        <ci>Cai</ci>
                                        <ci>Cai_RyR_mid</ci>
                                    </apply>
                                </apply>
                                <ci>Cai_RyR_den</ci>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <!-- deactivated by Ca_ER decreasing, so also activated by Ca_ER-->
            <apply>
                <eq/>
                <ci>hc_RyR_inf</ci>
                <apply>
                    <divide/>
                    <cn cellml:units="dimensionless">1</cn>
                    <apply>
                        <plus/>
                        <cn cellml:units="dimensionless">1</cn>
                        <apply>
                            <exp/>
                            <apply>
                                <divide/>
                                <apply>
                                    <minus/>
                                    <apply>
                                        <minus/>
                                        <ci>Ca_ER</ci>
                                        <ci>Ca_ER_RyR_mid</ci>
                                    </apply>
                                </apply>
                                <ci>Ca_ER_RyR_den</ci>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>c_RyR</ci>
                </apply>
                <apply>
                    <divide/>
                    <apply>
                        <minus/>
                        <ci>c_RyR_inf</ci>
                        <ci>c_RyR</ci>
                    </apply>
                    <apply>
                        <divide/>
                        <ci>tau_c_RyR</ci>
                        <cn cellml:units="millis_per_s">1000</cn>
                    </apply>
                </apply>
            </apply>
            <!-- tau_hc_RyR = tau_hc_RyR_min; // + 200{millis}/(exp((Ca_ER-Ca_ER_RyR_tau_mid)/Ca_ER_RyR_tau_den)+exp(-(Ca_ER-Ca_ER_RyR_tau_mid)/Ca_ER_RyR_tau_den));-->
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>hc_RyR</ci>
                </apply>
                <apply>
                    <divide/>
                    <apply>
                        <minus/>
                        <ci>hc_RyR_inf</ci>
                        <ci>hc_RyR</ci>
                    </apply>
                    <apply>
                        <divide/>
                        <ci>tau_hc_RyR</ci>
                        <cn cellml:units="millis_per_s">1000</cn>
                    </apply>
                </apply>
            </apply>
            <!-- TODO include cAMP dependence
 TODO should it be c_RyR^3, to be more similar to -->
            <apply>
                <eq/>
                <ci>j_RyR</ci>
                <apply>
                    <times/>
                    <ci>k_RyR</ci>
                    <apply>
                        <minus/>
                        <ci>Ca_ER</ci>
                        <ci>Cai</ci>
                    </apply>
                    <apply>
                        <power/>
                        <ci>c_RyR</ci>
                        <cn cellml:units="dimensionless">3</cn>
                    </apply>
                    <apply>
                        <power/>
                        <ci>hc_RyR</ci>
                        <cn cellml:units="dimensionless">3</cn>
                    </apply>
                </apply>
            </apply>
        </math>
        <!-- Ca concentration calculations in each region-->
        <variable name="Cai_init" public_interface="in" units="millimolar"/>
        <variable initial_value="Cai_init" name="Cai" public_interface="out" units="millimolar"/>
        <variable name="Ca_ER_init" public_interface="in" units="millimolar"/>
        <variable initial_value="Ca_ER_init" name="Ca_ER" public_interface="out" units="millimolar"/>
        <variable name="Cao" public_interface="in" units="millimolar"/>
        <variable name="j_Ca_N" public_interface="out" units="mol_per_s"/>
        <variable name="j_NaCa_Ca" public_interface="out" units="mol_per_s"/>
        <variable initial_value="Cai_init" name="Ca_bulk" public_interface="out" units="millimolar"/>
        <variable name="j_diffCa" public_interface="out" units="mol_per_s"/>
        <variable name="D_Ca" public_interface="in" units="m3_per_s"/>
        <variable name="j_diffCa_ER" public_interface="out" units="mol_per_s"/>
        <variable name="D_Ca_ER" public_interface="in" units="m3_per_s"/>
        <variable initial_value="Ca_ER_init" name="Ca_ER_pre" public_interface="out" units="millimolar"/>
        <!-- Ca buffering parameters-->
        <variable initial_value="B_Ca_init" name="B_Cai" public_interface="out" units="millimolar"/>
        <variable name="B_Ca_init" public_interface="in" units="millimolar"/>
        <variable name="B_Ca_total" public_interface="in" units="millimolar"/>
        <variable name="CaB_Cai" public_interface="out" units="millimolar"/>
        <variable initial_value="B_Ca_init" name="B_Ca_bulk" public_interface="out" units="millimolar"/>
        <variable name="CaB_Ca_bulk" public_interface="out" units="millimolar"/>
        <variable initial_value="B_Ca_init" name="B_Ca_ER_pre" public_interface="out" units="millimolar"/>
        <variable name="CaB_Ca_ER_pre" public_interface="out" units="millimolar"/>
        <variable name="k_bind_Ca" public_interface="in" units="per_millimolar_s"/>
        <variable name="k_unbind_Ca" public_interface="in" units="per_s"/>
        <variable name="k_bind_Ca_ER" public_interface="in" units="per_millimolar_s"/>
        <variable name="k_unbind_Ca_ER" public_interface="in" units="per_s"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>B_Cai</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <times/>
                        <ci>k_unbind_Ca</ci>
                        <ci>CaB_Cai</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>k_bind_Ca</ci>
                        <ci>Cai</ci>
                        <ci>B_Cai</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>CaB_Cai</ci>
                <apply>
                    <minus/>
                    <ci>B_Ca_total</ci>
                    <ci>B_Cai</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>B_Ca_bulk</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <times/>
                        <ci>k_unbind_Ca</ci>
                        <ci>CaB_Ca_bulk</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>k_bind_Ca</ci>
                        <ci>Ca_bulk</ci>
                        <ci>B_Ca_bulk</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>CaB_Ca_bulk</ci>
                <apply>
                    <minus/>
                    <ci>B_Ca_total</ci>
                    <ci>B_Ca_bulk</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>B_Ca_ER_pre</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <times/>
                        <ci>k_unbind_Ca_ER</ci>
                        <ci>CaB_Ca_ER_pre</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>k_bind_Ca_ER</ci>
                        <ci>Ca_ER_pre</ci>
                        <ci>B_Ca_ER_pre</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>CaB_Ca_ER_pre</ci>
                <apply>
                    <minus/>
                    <ci>B_Ca_total</ci>
                    <ci>B_Ca_ER_pre</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>j_Ca_N</ci>
                <apply>
                    <times/>
                    <apply>
                        <divide/>
                        <apply>
                            <minus/>
                            <ci>i_Ca_N</ci>
                        </apply>
                        <apply>
                            <times/>
                            <cn cellml:units="dimensionless">2</cn>
                            <ci>F</ci>
                        </apply>
                    </apply>
                    <cn cellml:units="A_per_nanoA" type="e-notation">1<sep/>-9</cn>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>j_NaCa_Ca</ci>
                <apply>
                    <times/>
                    <apply>
                        <divide/>
                        <ci>i_NaCa</ci>
                        <ci>F</ci>
                    </apply>
                    <cn cellml:units="A_per_nanoA" type="e-notation">1<sep/>-9</cn>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>j_diffCa</ci>
                <apply>
                    <times/>
                    <apply>
                        <minus/>
                        <ci>D_Ca</ci>
                    </apply>
                    <apply>
                        <minus/>
                        <ci>Cai</ci>
                        <ci>Ca_bulk</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>j_diffCa_ER</ci>
                <apply>
                    <times/>
                    <ci>D_Ca_ER</ci>
                    <apply>
                        <minus/>
                        <ci>Ca_ER_pre</ci>
                        <ci>Ca_ER</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>Cai</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <plus/>
                        <apply>
                            <times/>
                            <apply>
                                <divide/>
                                <cn cellml:units="dimensionless">1</cn>
                                <apply>
                                    <times/>
                                    <ci>Vol</ci>
                                    <ci>c_SL</ci>
                                </apply>
                            </apply>
                            <apply>
                                <plus/>
                                <ci>j_Ca_N</ci>
                                <ci>j_NaCa_Ca</ci>
                                <ci>j_IP3</ci>
                                <ci>j_RyR</ci>
                                <ci>j_leak_Ca</ci>
                                <ci>j_diffCa</ci>
                            </apply>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k_unbind_Ca</ci>
                            <ci>CaB_Cai</ci>
                        </apply>
                    </apply>
                    <apply>
                        <times/>
                        <ci>k_bind_Ca</ci>
                        <ci>Cai</ci>
                        <ci>B_Cai</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>Ca_bulk</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <plus/>
                        <apply>
                            <times/>
                            <apply>
                                <divide/>
                                <cn cellml:units="dimensionless">1</cn>
                                <apply>
                                    <times/>
                                    <ci>Vol</ci>
                                    <ci>c_bulk</ci>
                                </apply>
                            </apply>
                            <apply>
                                <minus/>
                                <ci>j_SERCA</ci>
                                <ci>j_diffCa</ci>
                            </apply>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k_unbind_Ca</ci>
                            <ci>CaB_Ca_bulk</ci>
                        </apply>
                    </apply>
                    <apply>
                        <times/>
                        <ci>k_bind_Ca</ci>
                        <ci>Ca_bulk</ci>
                        <ci>B_Ca_bulk</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>Ca_ER_pre</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <plus/>
                        <apply>
                            <times/>
                            <apply>
                                <divide/>
                                <cn cellml:units="dimensionless">1</cn>
                                <apply>
                                    <times/>
                                    <ci>Vol</ci>
                                    <ci>c_ER_pre</ci>
                                </apply>
                            </apply>
                            <apply>
                                <minus/>
                                <apply>
                                    <minus/>
                                    <apply>
                                        <minus/>
                                        <ci>j_SERCA</ci>
                                    </apply>
                                    <ci>j_leak_Ca</ci>
                                </apply>
                                <ci>j_diffCa_ER</ci>
                            </apply>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k_unbind_Ca_ER</ci>
                            <ci>CaB_Ca_ER_pre</ci>
                        </apply>
                    </apply>
                    <apply>
                        <times/>
                        <ci>k_bind_Ca_ER</ci>
                        <ci>Ca_ER_pre</ci>
                        <ci>B_Ca_ER_pre</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>Ca_ER</ci>
                </apply>
                <apply>
                    <times/>
                    <apply>
                        <divide/>
                        <cn cellml:units="dimensionless">1</cn>
                        <apply>
                            <times/>
                            <ci>Vol</ci>
                            <ci>c_ER</ci>
                        </apply>
                    </apply>
                    <apply>
                        <plus/>
                        <apply>
                            <minus/>
                            <apply>
                                <minus/>
                                <ci>j_IP3</ci>
                            </apply>
                            <ci>j_RyR</ci>
                        </apply>
                        <ci>j_diffCa_ER</ci>
                    </apply>
                </apply>
            </apply>
        </math>
        <!-- Calcium dependent vesicle binding TODO understand these equations better.
 units of b changed from picoF-->
        <!-- var b: dimensionless {pub: in};
 var gamma: dimensionless {pub: in};
 var kon: per_millimolar_s {pub: in};
 var koff: per_s {pub: in};
 var B0_init: dimensionless {pub: in};
 var B0: dimensionless {init: B0_init, pub: out};
 var B1_init: dimensionless {pub: in};
 var B1: dimensionless {init: B1_init, pub: out};
 var B2_init: dimensionless {pub: in};
 var B2: dimensionless {init: B2_init, pub: out};
 var B3_init: dimensionless {pub: in};
 var B3: dimensionless {init: B3_init, pub: out};
 var B4_init: dimensionless {pub: in};
 var B4: dimensionless {init: B4_init, pub: out};
 var B5_init: dimensionless {pub: in};
 var B5: dimensionless {init: B5_init, pub: out};-->
        <variable name="NE_init" public_interface="in" units="millimolar"/>
        <variable initial_value="NE_init" name="NE" public_interface="out" units="millimolar"/>
        <!-- var E: dimensionless {pub: out};-->
        <!-- ode(B0, t) = koff*B1-5{dimensionless}*kon*Cai*B0;
 ode(B1, t) = 5{dimensionless}*kon*Cai*B0+2{dimensionless}*koff*B2*pow(b, 1{dimensionless})-(koff*pow(b, 0{dimensionless})+4{dimensionless}*kon*Cai)*B1;
 ode(B2, t) = 4{dimensionless}*kon*Cai*B1+3{dimensionless}*koff*B3*sqr(b)-(2{dimensionless}*koff*pow(b, 1{dimensionless})+3{dimensionless}*kon*Cai)*B2;
 ode(B3, t) = 3{dimensionless}*kon*Cai*B2+4{dimensionless}*koff*B4*pow(b, 3{dimensionless})-(3{dimensionless}*koff*sqr(b)+2{dimensionless}*kon*Cai)*B3;
 ode(B4, t) = 2{dimensionless}*kon*Cai*B3+5{dimensionless}*koff*B5*pow(b, 4{dimensionless})-(4{dimensionless}*koff*pow(b, 3{dimensionless})+kon*Cai)*B4;
 ode(B5, t) = kon*Cai*B4-5{dimensionless}*koff*pow(b, 4{dimensionless})*B5;-->
        <!-- check units of gamma-->
        <!-- E = gamma*B5;-->
        <!-- TODO where does the 500 come from
 This is one of the equations I need to improve, to have accurate reuptake of NE
 This needs unit change from millis.-->
        <!-- ode(NE, t) = 1e3{dimensionless}*n_cleft*E*a_cleft/N_avo/V_cleft-NE*0.001{per_s};
 TODO improve this equation-->
        <variable name="Cai_NE_base" public_interface="in" units="millimolar"/>
        <variable name="k_NE" public_interface="in" units="per_s"/>
        <variable name="k_NET" public_interface="in" units="per_s"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>NE</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <times/>
                        <ci>k_NE</ci>
                        <apply>
                            <max/>
                            <apply>
                                <minus/>
                                <ci>Cai</ci>
                                <ci>Cai_NE_base</ci>
                            </apply>
                            <cn cellml:units="millimolar">0</cn>
                        </apply>
                    </apply>
                    <apply>
                        <times/>
                        <ci>k_NET</ci>
                        <apply>
                            <minus/>
                            <ci>NE</ci>
                            <ci>NE_init</ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
        </math>
        <!-- - NE*P_up?-->
    </component>
</model>
