<?xml version='1.0' encoding='UTF-8'?>
<model name="LCN_ArgusUNPUBLISHED_v01" xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cellml="http://www.cellml.org/cellml/1.1#">
    <component name="LCN_Gee2023">
        <variable name="t" public_interface="in" units="second"/>
        <variable name="k_evEmax_gainLCN" public_interface="in" units="dimensionless"/>
        <variable name="f_DMV" public_interface="in" units="Hz"/>
        <variable name="f_NActr" public_interface="in" units="Hz"/>
        <variable name="k_br_gainLCN" public_interface="in" units="dimensionless"/>
        <variable name="f_br" public_interface="in" units="Hz"/>
        <variable name="k_esh_gainLCN" public_interface="in" units="dimensionless"/>
        <variable name="f_esh" public_interface="in" units="Hz"/>
        <variable name="k_cp_gainLCN" public_interface="in" units="dimensionless"/>
        <variable name="f_cp" public_interface="in" units="Hz"/>
        <variable name="f_input_LCN_sum" public_interface="out" units="Hz"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>f_input_LCN_sum</ci>
                <apply>
                    <plus/>
                    <apply>
                        <minus/>
                        <apply>
                            <plus/>
                            <apply>
                                <times/>
                                <ci>k_evEmax_gainLCN</ci>
                                <apply>
                                    <plus/>
                                    <ci>f_DMV</ci>
                                    <ci>f_NActr</ci>
                                </apply>
                            </apply>
                            <apply>
                                <times/>
                                <ci>k_br_gainLCN</ci>
                                <ci>f_br</ci>
                            </apply>
                        </apply>
                        <apply>
                            <times/>
                            <ci>k_esh_gainLCN</ci>
                            <ci>f_esh</ci>
                        </apply>
                    </apply>
                    <apply>
                        <times/>
                        <ci>k_cp_gainLCN</ci>
                        <ci>f_cp</ci>
                    </apply>
                </apply>
            </apply>
        </math>
        <variable name="f_input_LCN" public_interface="out" units="Hz"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>f_input_LCN</ci>
                <piecewise>
                    <piece>
                        <ci>f_input_LCN_sum</ci>
                        <apply>
                            <geq/>
                            <ci>f_input_LCN_sum</ci>
                            <cn cellml:units="Hz">0</cn>
                        </apply>
                    </piece>
                    <otherwise>
                        <cn cellml:units="Hz">0</cn>
                    </otherwise>
                </piecewise>
            </apply>
        </math>
        <variable name="f_LCN" public_interface="out" units="Hz"/>
        <variable name="f_mid_LCN" public_interface="in" units="Hz"/>
        <variable name="f_min_LCN" public_interface="in" units="Hz"/>
        <variable name="f_max_LCN" public_interface="in" units="Hz"/>
        <variable name="k_LCN" public_interface="in" units="dimensionless"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>f_LCN</ci>
                <apply>
                    <plus/>
                    <apply>
                        <divide/>
                        <apply>
                            <minus/>
                            <ci>f_min_LCN</ci>
                            <ci>f_max_LCN</ci>
                        </apply>
                        <apply>
                            <plus/>
                            <cn cellml:units="dimensionless">1</cn>
                            <apply>
                                <power/>
                                <apply>
                                    <divide/>
                                    <ci>f_input_LCN</ci>
                                    <ci>f_mid_LCN</ci>
                                </apply>
                                <ci>k_LCN</ci>
                            </apply>
                        </apply>
                    </apply>
                    <ci>f_max_LCN</ci>
                </apply>
            </apply>
        </math>
    </component>
</model>
