<?xml version='1.0' encoding='UTF-8'?>
<model name="NA_ArgusUNPUBLISHED_v01" xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cellml="http://www.cellml.org/cellml/1.1#">
    <component name="NA_Gee2023">
        <variable name="t" public_interface="in" units="second"/>
        <variable name="f_NTS_br" public_interface="in" units="Hz"/>
        <variable name="f_NTS_ls" public_interface="in" units="Hz"/>
        <variable name="f_NTS_cp" public_interface="in" units="Hz"/>
        <variable name="f_NTS_ch" public_interface="in" units="Hz"/>
        <variable name="f_NTS_output" public_interface="out" units="Hz"/>
        <variable name="f_NA_input" public_interface="out" units="Hz"/>
        <variable name="k_RSA" public_interface="in" units="dimensionless"/>
        <variable name="s_floor" public_interface="in" units="dimensionless"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>f_NTS_output</ci>
                <apply>
                    <plus/>
                    <ci>f_NTS_br</ci>
                    <ci>f_NTS_ls</ci>
                    <ci>f_NTS_cp</ci>
                    <ci>f_NTS_ch</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>f_NA_input</ci>
                <piecewise>
                    <piece>
                        <ci>f_NTS_output</ci>
                        <apply>
                            <gt/>
                            <ci>s_floor</ci>
                            <cn cellml:units="dimensionless">0.4</cn>
                        </apply>
                    </piece>
                    <otherwise>
                        <apply>
                            <times/>
                            <ci>f_NTS_output</ci>
                            <ci>k_RSA</ci>
                        </apply>
                    </otherwise>
                </piecewise>
            </apply>
        </math>
        <variable name="f_min_NA" public_interface="in" units="Hz"/>
        <variable name="f_max_NA" public_interface="in" units="Hz"/>
        <variable name="f_mid_NA" public_interface="in" units="Hz"/>
        <variable name="f_NA" public_interface="out" units="Hz"/>
        <variable name="k_NA" public_interface="in" units="dimensionless"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>f_NA</ci>
                <apply>
                    <plus/>
                    <apply>
                        <divide/>
                        <apply>
                            <minus/>
                            <ci>f_min_NA</ci>
                            <ci>f_max_NA</ci>
                        </apply>
                        <apply>
                            <plus/>
                            <cn cellml:units="dimensionless">1</cn>
                            <apply>
                                <power/>
                                <apply>
                                    <divide/>
                                    <ci>f_NA_input</ci>
                                    <ci>f_mid_NA</ci>
                                </apply>
                                <ci>k_NA</ci>
                            </apply>
                        </apply>
                    </apply>
                    <ci>f_max_NA</ci>
                </apply>
            </apply>
        </math>
    </component>
</model>
