<?xml version='1.0' encoding='UTF-8'?>
<model name="PNDMV_ArgusUNPUBLISHED_v01" xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cellml="http://www.cellml.org/cellml/1.1#">
    <component name="PNDMV_Gee2023">
        <variable name="f_PNDMV" public_interface="out" units="Hz"/>
        <variable name="f_DMV" public_interface="in" units="Hz"/>
        <variable name="f_NActr" public_interface="in" units="Hz"/>
        <variable name="f_LCN" public_interface="in" units="Hz"/>
        <variable name="f_mid_PNDMV" public_interface="in" units="Hz"/>
        <variable name="f_min_PNDMV" public_interface="in" units="Hz"/>
        <variable name="f_max_PNDMV" public_interface="in" units="Hz"/>
        <variable name="k_PNDMV" public_interface="in" units="dimensionless"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>f_PNDMV</ci>
                <apply>
                    <plus/>
                    <apply>
                        <divide/>
                        <apply>
                            <minus/>
                            <ci>f_min_PNDMV</ci>
                            <ci>f_max_PNDMV</ci>
                        </apply>
                        <apply>
                            <plus/>
                            <cn cellml:units="dimensionless">1</cn>
                            <apply>
                                <power/>
                                <apply>
                                    <divide/>
                                    <apply>
                                        <plus/>
                                        <ci>f_DMV</ci>
                                        <ci>f_NActr</ci>
                                        <ci>f_LCN</ci>
                                    </apply>
                                    <ci>f_mid_PNDMV</ci>
                                </apply>
                                <ci>k_PNDMV</ci>
                            </apply>
                        </apply>
                    </apply>
                    <ci>f_max_PNDMV</ci>
                </apply>
            </apply>
        </math>
        <variable initial_value="0" name="f_PNDMV_filt" public_interface="out" units="Hz"/>
        <variable name="tau_PNDMV" public_interface="in" units="second"/>
        <variable name="t" public_interface="in" units="second"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>f_PNDMV_filt</ci>
                </apply>
                <apply>
                    <divide/>
                    <apply>
                        <minus/>
                        <ci>f_PNDMV</ci>
                        <ci>f_PNDMV_filt</ci>
                    </apply>
                    <ci>tau_PNDMV</ci>
                </apply>
            </apply>
        </math>
    </component>
</model>
