<?xml version='1.0' encoding='UTF-8'?>
<model name="afferent_to_sympathetic_efferent_Ursino1998_v01" xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cellml="http://www.cellml.org/cellml/1.1#">
    <component name="afferent_to_sympathetic_efferent_type">
        <variable name="t" public_interface="in" units="second"/>
        <!-- Constants-->
        <variable name="f_es_0" public_interface="in" units="per_s"/>
        <variable name="f_es_inf" public_interface="in" units="per_s"/>
        <variable name="f_es_max" public_interface="in" units="per_s"/>
        <variable name="k_es" public_interface="in" units="second"/>
        <!-- should be changed to second-->
        <!-- var theta_s: per_s {pub: in}; //currently ignoring CNS-->
        <variable name="W_bs" public_interface="in" units="dimensionless"/>
        <variable name="W_cs" public_interface="in" units="dimensionless"/>
        <!-- var W_cp: dimensionless {pub: in}; TODO cardiopulmonary and lungstretch signals need to be included.
 var W_ls: dimensionless {pub: in};-->
        <!-- Variables-->
        <variable name="f_apc" public_interface="in" units="per_s"/>
        <variable name="f_ab" public_interface="in" units="per_s"/>
        <!-- var f_ap: per_s {pub: in};-->
        <variable name="f_s_premax" public_interface="out" units="per_s"/>
        <variable name="f_s" public_interface="out" units="per_s"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>f_s_premax</ci>
                <apply>
                    <plus/>
                    <ci>f_es_inf</ci>
                    <apply>
                        <times/>
                        <apply>
                            <minus/>
                            <ci>f_es_0</ci>
                            <ci>f_es_inf</ci>
                        </apply>
                        <apply>
                            <exp/>
                            <apply>
                                <times/>
                                <ci>k_es</ci>
                                <apply>
                                    <plus/>
                                    <apply>
                                        <times/>
                                        <ci>W_bs</ci>
                                        <ci>f_ab</ci>
                                    </apply>
                                    <apply>
                                        <times/>
                                        <ci>W_cs</ci>
                                        <ci>f_apc</ci>
                                    </apply>
                                </apply>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <!-- + w_cp*f_cp + w_ls*f_ls));-->
            <!--IGNORING CNS and LUNG STRETCH-->
            <apply>
                <eq/>
                <ci>f_s</ci>
                <piecewise>
                    <piece>
                        <ci>f_s_premax</ci>
                        <apply>
                            <leq/>
                            <ci>f_s_premax</ci>
                            <ci>f_es_max</ci>
                        </apply>
                    </piece>
                    <otherwise>
                        <ci>f_es_max</ci>
                    </otherwise>
                </piecewise>
            </apply>
        </math>
    </component>
</model>
