<?xml version='1.0' encoding='UTF-8'?>
<model name="efferent_heart_period_effector_Ursino1998_v01" xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cellml="http://www.cellml.org/cellml/1.1#">
    <component name="efferent_heart_period_effector_type">
        <variable name="t" public_interface="in" units="second"/>
        <!-- IMPORTANT: THIS MODULE ASSUMES NO DELAY CONSTANTS, WHICH IS DIFFERENT TO THE ORIGINAL PAPER, ALBANESE2016-->
        <!-- Constants-->
        <variable name="G_Ts" public_interface="in" units="second"/>
        <variable name="G_Tv" public_interface="in" units="s2"/>
        <variable name="f_es_min" public_interface="in" units="per_s"/>
        <variable name="tau_Ts" public_interface="in" units="second"/>
        <variable name="tau_Tv" public_interface="in" units="second"/>
        <!-- Variables-->
        <variable name="f_s" public_interface="in" units="per_s"/>
        <variable name="f_v" public_interface="in" units="per_s"/>
        <variable initial_value="0.0" name="Delta_Ts" public_interface="out" units="second"/>
        <variable initial_value="0.0" name="Delta_Tv" public_interface="out" units="second"/>
        <variable name="Delta_T" public_interface="out" units="second"/>
        <variable name="sigma_Ts" public_interface="out" units="second"/>
        <variable name="sigma_Tv" public_interface="out" units="second"/>
        <!-- Equations-->
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>sigma_Ts</ci>
                <piecewise>
                    <piece>
                        <apply>
                            <times/>
                            <ci>G_Ts</ci>
                            <apply>
                                <ln/>
                                <apply>
                                    <times/>
                                    <cn cellml:units="second">1</cn>
                                    <apply>
                                        <plus/>
                                        <apply>
                                            <minus/>
                                            <ci>f_s</ci>
                                            <ci>f_es_min</ci>
                                        </apply>
                                        <cn cellml:units="per_s">1</cn>
                                    </apply>
                                </apply>
                            </apply>
                        </apply>
                        <apply>
                            <geq/>
                            <ci>f_s</ci>
                            <ci>f_es_min</ci>
                        </apply>
                    </piece>
                    <otherwise>
                        <cn cellml:units="second">0</cn>
                    </otherwise>
                </piecewise>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>Delta_Ts</ci>
                </apply>
                <apply>
                    <divide/>
                    <apply>
                        <plus/>
                        <apply>
                            <minus/>
                            <ci>Delta_Ts</ci>
                        </apply>
                        <ci>sigma_Ts</ci>
                    </apply>
                    <ci>tau_Ts</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>sigma_Tv</ci>
                <apply>
                    <times/>
                    <ci>G_Tv</ci>
                    <ci>f_v</ci>
                </apply>
            </apply>
            <!--DELAY IGNORED-->
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>Delta_Tv</ci>
                </apply>
                <apply>
                    <divide/>
                    <apply>
                        <plus/>
                        <apply>
                            <minus/>
                            <ci>Delta_Tv</ci>
                        </apply>
                        <ci>sigma_Tv</ci>
                    </apply>
                    <ci>tau_Tv</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>Delta_T</ci>
                <apply>
                    <plus/>
                    <ci>Delta_Tv</ci>
                    <ci>Delta_Ts</ci>
                </apply>
            </apply>
        </math>
    </component>
</model>
