<?xml version='1.0' encoding='UTF-8'?>
<model name="efferent_resistance_effector_ArgusUNPUBLISHED_v01" xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cellml="http://www.cellml.org/cellml/1.1#">
    <component name="efferent_resistance_effector_Argus_type">
        <variable name="t" public_interface="in" units="second"/>
        <!-- IMPORTANT: THIS MODULE ASSUMES NO DELAY CONSTANTS, WHICH IS DIFFERENT TO THE ORIGINAL PAPER, ALBANESE2016-->
        <!-- Constants-->
        <variable name="G_theta" public_interface="in" units="dimensionless"/>
        <variable name="f_es_min" public_interface="in" units="per_s"/>
        <variable name="f_es_mid" public_interface="in" units="per_s"/>
        <variable name="tau_theta" public_interface="in" units="second"/>
        <!-- Variables-->
        <variable name="f_s" public_interface="in" units="per_s"/>
        <variable name="Delta_theta" public_interface="out" units="dimensionless"/>
        <variable initial_value="0.0" name="sigma_theta" public_interface="out" units="per_s"/>
        <!-- Delta_theta now multiplies by the baseline resistance to calculate how much to add to allow for easier calibration.-->
        <!-- Equations-->
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>sigma_theta</ci>
                </apply>
                <apply>
                    <divide/>
                    <apply>
                        <minus/>
                        <apply>
                            <max/>
                            <apply>
                                <minus/>
                                <ci>f_s</ci>
                                <ci>f_es_min</ci>
                            </apply>
                            <cn cellml:units="per_s">0</cn>
                        </apply>
                        <ci>sigma_theta</ci>
                    </apply>
                    <ci>tau_theta</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>Delta_theta</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <ci>G_theta</ci>
                        <ci>sigma_theta</ci>
                    </apply>
                    <apply>
                        <plus/>
                        <ci>f_es_mid</ci>
                        <ci>sigma_theta</ci>
                    </apply>
                </apply>
            </apply>
        </math>
    </component>
</model>
