<?xml version='1.0' encoding='UTF-8'?>
<model name="efferent_respiratory_effector_Albanese2016_v01" xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cellml="http://www.cellml.org/cellml/1.1#">
    <component name="efferent_respiratory_effector_type">
        <variable name="t" public_interface="in" units="second"/>
        <!-- peripheral chemo constants
 var D_p: second {pub: in}; DELAY NOT APPLIED-->
        <variable name="G_pA" public_interface="in" units="Js_per_m3"/>
        <variable name="G_pf" public_interface="in" units="dimensionless"/>
        <variable name="tau_pA_min" public_interface="in" units="second"/>
        <variable name="tau_pA_max" public_interface="in" units="second"/>
        <variable name="tau_pA" public_interface="out" units="second"/>
        <variable name="tau_pf_min" public_interface="in" units="second"/>
        <variable name="tau_pf_max" public_interface="in" units="second"/>
        <variable name="tau_pf" public_interface="out" units="second"/>
        <!-- unit inconsistancy for 0 resolved-->
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>tau_pA</ci>
                <piecewise>
                    <piece>
                        <ci>tau_pA_max</ci>
                        <apply>
                            <geq/>
                            <ci>u_p_resp</ci>
                            <cn cellml:units="per_s">0</cn>
                        </apply>
                    </piece>
                    <otherwise>
                        <ci>tau_pA_min</ci>
                    </otherwise>
                </piecewise>
            </apply>
            <apply>
                <eq/>
                <ci>tau_pf</ci>
                <piecewise>
                    <piece>
                        <ci>tau_pf_max</ci>
                        <apply>
                            <geq/>
                            <ci>u_p_resp</ci>
                            <cn cellml:units="per_s">0</cn>
                        </apply>
                    </piece>
                    <otherwise>
                        <ci>tau_pf_min</ci>
                    </otherwise>
                </piecewise>
            </apply>
        </math>
        <!--central chemo constants
 var D_c: second {pub: in}; DELAY NOT APPLIED-->
        <variable name="G_cA_max" public_interface="in" units="Js_per_m3"/>
        <variable name="G_cA" public_interface="out" units="Js_per_m3"/>
        <variable name="G_cf_max" public_interface="in" units="dimensionless"/>
        <variable name="G_cf" public_interface="out" units="dimensionless"/>
        <variable name="tau_cA_max" public_interface="in" units="second"/>
        <variable name="tau_cA_min" public_interface="in" units="second"/>
        <variable name="tau_cA" public_interface="out" units="second"/>
        <variable name="tau_cf_max" public_interface="in" units="second"/>
        <variable name="tau_cf_min" public_interface="in" units="second"/>
        <variable name="tau_cf" public_interface="out" units="second"/>
        <variable name="u_CO2_c_thresh" public_interface="in" units="per_s"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>G_cA</ci>
                <piecewise>
                    <piece>
                        <ci>G_cA_max</ci>
                        <apply>
                            <gt/>
                            <ci>u_c_resp</ci>
                            <ci>u_CO2_c_thresh</ci>
                        </apply>
                    </piece>
                    <otherwise>
                        <cn cellml:units="Js_per_m3">0</cn>
                    </otherwise>
                </piecewise>
            </apply>
            <apply>
                <eq/>
                <ci>G_cf</ci>
                <piecewise>
                    <piece>
                        <ci>G_cf_max</ci>
                        <apply>
                            <gt/>
                            <ci>u_c_resp</ci>
                            <ci>u_CO2_c_thresh</ci>
                        </apply>
                    </piece>
                    <otherwise>
                        <cn cellml:units="dimensionless">0</cn>
                    </otherwise>
                </piecewise>
            </apply>
            <apply>
                <eq/>
                <ci>tau_cA</ci>
                <piecewise>
                    <piece>
                        <ci>tau_cA_max</ci>
                        <apply>
                            <gt/>
                            <ci>u_c_resp</ci>
                            <ci>u_CO2_c_thresh</ci>
                        </apply>
                    </piece>
                    <otherwise>
                        <ci>tau_cA_min</ci>
                    </otherwise>
                </piecewise>
            </apply>
            <apply>
                <eq/>
                <ci>tau_cf</ci>
                <piecewise>
                    <piece>
                        <ci>tau_cf_max</ci>
                        <apply>
                            <gt/>
                            <ci>u_c_resp</ci>
                            <ci>u_CO2_c_thresh</ci>
                        </apply>
                    </piece>
                    <otherwise>
                        <ci>tau_cf_min</ci>
                    </otherwise>
                </piecewise>
            </apply>
        </math>
        <!-- boundary conditions/inputs-->
        <variable name="u_c_resp" public_interface="in" units="per_s"/>
        <variable name="u_p_resp" public_interface="in" units="per_s"/>
        <!-- variables-->
        <variable initial_value="0.0" name="Delta_RR_c" public_interface="out" units="Hz"/>
        <variable initial_value="0.0" name="Delta_RR_p" public_interface="out" units="Hz"/>
        <variable name="Delta_RR_resp" public_interface="out" units="per_s"/>
        <variable initial_value="0.0" name="Delta_P_mus_c" public_interface="out" units="J_per_m3"/>
        <variable initial_value="0.0" name="Delta_P_mus_p" public_interface="out" units="J_per_m3"/>
        <variable name="Delta_P_mus" public_interface="out" units="J_per_m3"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>Delta_RR_c</ci>
                </apply>
                <apply>
                    <divide/>
                    <apply>
                        <plus/>
                        <apply>
                            <minus/>
                            <ci>Delta_RR_c</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>G_cf</ci>
                            <ci>u_c_resp</ci>
                        </apply>
                    </apply>
                    <ci>tau_cf</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>Delta_RR_p</ci>
                </apply>
                <apply>
                    <divide/>
                    <apply>
                        <plus/>
                        <apply>
                            <minus/>
                            <ci>Delta_RR_p</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>G_pf</ci>
                            <ci>u_p_resp</ci>
                        </apply>
                    </apply>
                    <ci>tau_pf</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>Delta_P_mus_c</ci>
                </apply>
                <apply>
                    <divide/>
                    <apply>
                        <plus/>
                        <apply>
                            <minus/>
                            <ci>Delta_P_mus_c</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>G_cA</ci>
                            <ci>u_c_resp</ci>
                        </apply>
                    </apply>
                    <ci>tau_cA</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>Delta_P_mus_p</ci>
                </apply>
                <apply>
                    <divide/>
                    <apply>
                        <plus/>
                        <apply>
                            <minus/>
                            <ci>Delta_P_mus_p</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>G_pA</ci>
                            <ci>u_p_resp</ci>
                        </apply>
                    </apply>
                    <ci>tau_pA</ci>
                </apply>
            </apply>
        </math>
        <variable name="Delta_RR_resp_max" public_interface="in" units="per_s"/>
        <variable name="Delta_P_mus_max" public_interface="in" units="J_per_m3"/>
        <variable name="Delta_RR_resp_min" public_interface="in" units="per_s"/>
        <variable name="Delta_P_mus_min" public_interface="in" units="J_per_m3"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>Delta_RR_resp</ci>
                <apply>
                    <min/>
                    <apply>
                        <max/>
                        <apply>
                            <plus/>
                            <ci>Delta_RR_c</ci>
                            <ci>Delta_RR_p</ci>
                        </apply>
                        <ci>Delta_RR_resp_min</ci>
                    </apply>
                    <ci>Delta_RR_resp_max</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>Delta_P_mus</ci>
                <apply>
                    <min/>
                    <apply>
                        <max/>
                        <apply>
                            <plus/>
                            <ci>Delta_P_mus_c</ci>
                            <ci>Delta_P_mus_p</ci>
                        </apply>
                        <ci>Delta_P_mus_min</ci>
                    </apply>
                    <ci>Delta_P_mus_max</ci>
                </apply>
            </apply>
        </math>
    </component>
</model>
