<?xml version='1.0' encoding='UTF-8'?>
<model name="efferent_venous_us_volume_and_compliance_effector_ArgusUNPUBLISHED_v01" xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cellml="http://www.cellml.org/cellml/1.1#">
    <component name="efferent_venous_us_volume_and_compliance_effector_Argus_type">
        <variable name="t" public_interface="in" units="second"/>
        <!-- IMPORTANT: THIS MODULE ASSUMES NO DELAY CONSTANTS, WHICH IS DIFFERENT TO THE ORIGINAL PAPER, ALBANESE2016-->
        <!-- IMPORTANT: THIS MODULE HAS BEEN MODIFIED TO CONTROL COMPLIANCE INSTEAD OF UNSTRESSED VOLUME. PARAMS ARE UNVALIDATED-->
        <!-- Constants-->
        <variable name="G_theta_us" public_interface="in" units="dimensionless"/>
        <variable name="G_theta_compliance" public_interface="in" units="dimensionless"/>
        <variable name="f_es_min" public_interface="in" units="per_s"/>
        <variable name="f_es_mid" public_interface="in" units="per_s"/>
        <variable name="tau_theta_us" public_interface="in" units="second"/>
        <variable name="tau_theta_compliance" public_interface="in" units="second"/>
        <!-- Variables-->
        <variable name="f_s" public_interface="in" units="per_s"/>
        <variable name="Delta_theta_us" public_interface="out" units="dimensionless"/>
        <variable initial_value="0.0" name="sigma_theta_us" public_interface="out" units="per_s"/>
        <variable name="Delta_theta_compliance" public_interface="out" units="dimensionless"/>
        <variable initial_value="0.0" name="sigma_theta_compliance" public_interface="out" units="per_s"/>
        <!-- Equations-->
        <!-- TODO for both of the below, it probably shouln't be additive. It should be impossible to get to negative.
 changed the below from ln to hill function so we can limit the amount it can change compliance and us volume. Now G_theta_us is the maximum amount of change
 that can occur to the us volume
 G_theta is now a max proportion of us volume or compliance that can be decreased.-->
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>sigma_theta_us</ci>
                </apply>
                <apply>
                    <divide/>
                    <apply>
                        <minus/>
                        <apply>
                            <max/>
                            <apply>
                                <minus/>
                                <ci>f_s</ci>
                                <ci>f_es_min</ci>
                            </apply>
                            <cn cellml:units="per_s">0</cn>
                        </apply>
                        <ci>sigma_theta_us</ci>
                    </apply>
                    <ci>tau_theta_us</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>Delta_theta_us</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <ci>G_theta_compliance</ci>
                        <ci>sigma_theta_us</ci>
                    </apply>
                    <apply>
                        <plus/>
                        <ci>f_es_mid</ci>
                        <ci>sigma_theta_us</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>sigma_theta_compliance</ci>
                </apply>
                <apply>
                    <divide/>
                    <apply>
                        <minus/>
                        <apply>
                            <max/>
                            <apply>
                                <minus/>
                                <ci>f_s</ci>
                                <ci>f_es_min</ci>
                            </apply>
                            <cn cellml:units="per_s">0</cn>
                        </apply>
                        <ci>sigma_theta_compliance</ci>
                    </apply>
                    <ci>tau_theta_compliance</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>Delta_theta_compliance</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <ci>G_theta_compliance</ci>
                        <ci>sigma_theta_compliance</ci>
                    </apply>
                    <apply>
                        <plus/>
                        <ci>f_es_mid</ci>
                        <ci>sigma_theta_compliance</ci>
                    </apply>
                </apply>
            </apply>
        </math>
    </component>
</model>
