<?xml version='1.0' encoding='UTF-8'?>
<model name="local_flow_control_brain_Ursino2000_v01" xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cellml="http://www.cellml.org/cellml/1.1#">
    <component name="local_flow_control_brain_type">
        <variable name="t" public_interface="in" units="second"/>
        <variable initial_value="0.0" name="x_O2" public_interface="out" units="dimensionless"/>
        <variable name="phi_P_CO2_a" public_interface="out" units="dimensionless"/>
        <variable initial_value="0.0" name="x_CO2" public_interface="out" units="dimensionless"/>
        <variable name="C_O2_p" public_interface="in" units="dimensionless"/>
        <variable name="P_CO2_a" public_interface="in" units="J_per_m3"/>
        <variable name="R_local_multiplier" public_interface="out" units="dimensionless"/>
        <variable name="P_O2_a" public_interface="in" units="J_per_m3"/>
        <variable name="G_p" public_interface="out" units="dimensionless"/>
        <!-- Constants-->
        <variable name="P_CO2_a_nom" public_interface="in" units="J_per_m3"/>
        <variable name="C_O2_vb_nom" public_interface="in" units="dimensionless"/>
        <variable name="tau_O2" public_interface="in" units="second"/>
        <variable name="tau_CO2" public_interface="in" units="second"/>
        <variable name="g_O2_b" public_interface="in" units="dimensionless"/>
        <variable name="A_b_lc" public_interface="in" units="dimensionless"/>
        <variable name="B_b_lc" public_interface="in" units="dimensionless"/>
        <variable name="C_b_lc" public_interface="in" units="dimensionless"/>
        <variable name="D_b_lc" public_interface="in" units="dimensionless"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>x_O2</ci>
                </apply>
                <apply>
                    <divide/>
                    <apply>
                        <minus/>
                        <apply>
                            <plus/>
                            <apply>
                                <minus/>
                                <ci>x_O2</ci>
                            </apply>
                            <ci>C_O2_p</ci>
                        </apply>
                        <ci>C_O2_vb_nom</ci>
                    </apply>
                    <ci>tau_O2</ci>
                </apply>
            </apply>
            <!-- Unit consistancy in ln() - may need to add the unit-->
            <apply>
                <eq/>
                <ci>phi_P_CO2_a</ci>
                <apply>
                    <minus/>
                    <apply>
                        <divide/>
                        <apply>
                            <plus/>
                            <ci>A_b_lc</ci>
                            <apply>
                                <divide/>
                                <ci>B_b_lc</ci>
                                <apply>
                                    <plus/>
                                    <cn cellml:units="dimensionless">1</cn>
                                    <apply>
                                        <times/>
                                        <ci>C_b_lc</ci>
                                        <apply>
                                            <exp/>
                                            <apply>
                                                <times/>
                                                <ci>D_b_lc</ci>
                                                <apply>
                                                    <ln/>
                                                    <apply>
                                                        <times/>
                                                        <cn cellml:units="m3_per_J">1</cn>
                                                        <ci>P_CO2_a</ci>
                                                    </apply>
                                                </apply>
                                            </apply>
                                        </apply>
                                    </apply>
                                </apply>
                            </apply>
                        </apply>
                        <apply>
                            <plus/>
                            <ci>A_b_lc</ci>
                            <apply>
                                <divide/>
                                <ci>B_b_lc</ci>
                                <apply>
                                    <plus/>
                                    <cn cellml:units="dimensionless">1</cn>
                                    <apply>
                                        <times/>
                                        <ci>C_b_lc</ci>
                                        <apply>
                                            <exp/>
                                            <apply>
                                                <times/>
                                                <ci>D_b_lc</ci>
                                                <apply>
                                                    <ln/>
                                                    <apply>
                                                        <times/>
                                                        <cn cellml:units="m3_per_J">1</cn>
                                                        <ci>P_CO2_a_nom</ci>
                                                    </apply>
                                                </apply>
                                            </apply>
                                        </apply>
                                    </apply>
                                </apply>
                            </apply>
                        </apply>
                    </apply>
                    <cn cellml:units="dimensionless">1</cn>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>x_CO2</ci>
                </apply>
                <apply>
                    <divide/>
                    <apply>
                        <plus/>
                        <apply>
                            <minus/>
                            <ci>x_CO2</ci>
                        </apply>
                        <ci>phi_P_CO2_a</ci>
                    </apply>
                    <ci>tau_CO2</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>G_p</ci>
                <apply>
                    <plus/>
                    <apply>
                        <minus/>
                        <cn cellml:units="dimensionless">1</cn>
                        <apply>
                            <times/>
                            <ci>g_O2_b</ci>
                            <ci>x_O2</ci>
                        </apply>
                    </apply>
                    <ci>x_CO2</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>R_local_multiplier</ci>
                <apply>
                    <divide/>
                    <cn cellml:units="dimensionless">1</cn>
                    <ci>G_p</ci>
                </apply>
            </apply>
        </math>
    </component>
</model>
