<?xml version='1.0' encoding='UTF-8'?>
<model name="sympathetic_afferent_ArgusUNPUBLISHED_v01" xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cellml="http://www.cellml.org/cellml/1.1#">
    <component name="sympathetic_afferent_Gee2023">
        <variable name="t" public_interface="in" units="second"/>
        <variable name="f_ash" public_interface="out" units="Hz"/>
        <variable name="G_abh" public_interface="in" units="dimensionless"/>
        <variable name="f_br" public_interface="in" units="Hz"/>
        <variable name="G_alh" public_interface="in" units="dimensionless"/>
        <variable name="f_ls" public_interface="in" units="Hz"/>
        <variable name="G_ach" public_interface="in" units="dimensionless"/>
        <variable name="f_cp" public_interface="in" units="Hz"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>f_ash</ci>
                <apply>
                    <plus/>
                    <apply>
                        <minus/>
                        <apply>
                            <times/>
                            <ci>G_abh</ci>
                            <ci>f_br</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>G_alh</ci>
                            <ci>f_ls</ci>
                        </apply>
                    </apply>
                    <apply>
                        <times/>
                        <ci>G_ach</ci>
                        <apply>
                            <minus/>
                            <ci>f_cp</ci>
                            <cn cellml:units="Hz">10</cn>
                        </apply>
                    </apply>
                </apply>
            </apply>
        </math>
        <!-- s.47 (peripheral circulation)-->
        <variable name="f_asp" public_interface="out" units="Hz"/>
        <variable name="G_abp" public_interface="in" units="dimensionless"/>
        <variable name="G_alp" public_interface="in" units="dimensionless"/>
        <variable name="G_acp" public_interface="in" units="dimensionless"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>f_asp</ci>
                <apply>
                    <plus/>
                    <apply>
                        <times/>
                        <ci>G_abp</ci>
                        <ci>f_br</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>G_alp</ci>
                        <ci>f_ls</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>G_acp</ci>
                        <apply>
                            <minus/>
                            <ci>f_cp</ci>
                            <cn cellml:units="Hz">10</cn>
                        </apply>
                    </apply>
                </apply>
            </apply>
        </math>
        <!-- s.48 (unstressed volumes)-->
        <variable name="f_asv" public_interface="out" units="Hz"/>
        <variable name="G_abv" public_interface="in" units="dimensionless"/>
        <variable name="G_alv" public_interface="in" units="dimensionless"/>
        <variable name="G_acv" public_interface="in" units="dimensionless"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>f_asv</ci>
                <apply>
                    <plus/>
                    <apply>
                        <times/>
                        <ci>G_abv</ci>
                        <ci>f_br</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>G_alv</ci>
                        <ci>f_ls</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>G_acv</ci>
                        <apply>
                            <minus/>
                            <ci>f_cp</ci>
                            <cn cellml:units="Hz">10</cn>
                        </apply>
                    </apply>
                </apply>
            </apply>
        </math>
    </component>
</model>
