<?xml version='1.0' encoding='UTF-8'?>
<model name="compliance_vv_linear_volume_flux" xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cellml="http://www.cellml.org/cellml/1.1#">
    <component name="compliance_vv_linear_volume_flux">
        <variable name="t" public_interface="in" units="second"/>
        <variable name="C" public_interface="in" units="m6_per_J"/>
        <variable name="q_0" public_interface="in" units="m3"/>
        <variable name="fraction" public_interface="in" units="dimensionless"/>
        <variable name="u_0" public_interface="in" units="J_per_m3"/>
        <variable name="q_C_init" public_interface="in" units="m3"/>
        <variable name="u_ext" public_interface="in" units="J_per_m3"/>
        <variable name="v_in" public_interface="in" units="m3_per_s"/>
        <variable name="v_out" public_interface="in" units="m3_per_s"/>
        <variable name="C_eff" public_interface="out" units="m6_per_J"/>
        <variable initial_value="q_C_init" name="q_C" public_interface="out" units="m3"/>
        <variable name="u_C" public_interface="out" units="J_per_m3"/>
        <variable name="u" public_interface="out" units="J_per_m3"/>
        <variable name="q" public_interface="out" units="m3"/>
        <variable name="du_C_dt" public_interface="out" units="J_per_m3s"/>
        <variable name="R_v" public_interface="out" units="Js_per_m6"/>
        <variable name="v_blood_intake" public_interface="in" units="m3_per_s"/>
        <variable name="blood_ctl_dir" public_interface="in" units="dimensionless"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply><eq/><ci>C_eff</ci><apply><times/><ci>fraction</ci><ci>C</ci></apply></apply>
            <apply><eq/><apply><diff/><bvar><ci>t</ci></bvar><ci>q_C</ci></apply><apply><plus/><apply><minus/><ci>v_in</ci><ci>v_out</ci></apply><apply><times/><ci>blood_ctl_dir</ci><ci>v_blood_intake</ci></apply></apply></apply>
            <apply><eq/><ci>u_C</ci><apply><divide/><ci>q_C</ci><ci>C_eff</ci></apply></apply>
            <apply><eq/><ci>q</ci><apply><plus/><apply><times/><ci>fraction</ci><ci>q_0</ci></apply><ci>q_C</ci></apply></apply>
            <apply><eq/><ci>du_C_dt</ci><apply><divide/><apply><minus/><ci>v_in</ci><ci>v_out</ci></apply><ci>C_eff</ci></apply></apply>
            <apply><eq/><ci>R_v</ci><apply><divide/><cn cellml:units="second">0.01</cn><ci>C_eff</ci></apply></apply>
            <apply><eq/><ci>u</ci><apply><plus/><ci>u_0</ci><ci>u_C</ci><apply><times/><ci>R_v</ci><apply><minus/><ci>v_in</ci><ci>v_out</ci></apply></apply><ci>u_ext</ci></apply></apply>
        </math>
    </component>
</model>
