def model BG_volume_control_ArgusUNPUBLISHED_v01 as

  def comp BG_volume_control_main_type as
    var t: second {pub: in};
    var RT: J_per_mol {pub: in};
    var F: C_per_mol {pub: in};
    var q_ac_W_init: litre {pub: in};
    var q_vc_W_init: litre {pub: in};
    var q_gi_W_init: litre {pub: in};
    var q_pt_W_init: litre {pub: in};
    var q_giEpi_W: litre {pub: in};
    var q_ptEpi_W: litre {pub: in};
    var q_tot_W: litre {pub: out};
    var q_vc_Na_init: mole {pub: in};
    var q_gi_Na_init: mole {pub: in};
    var q_pt_Na_init: mole {pub: in};
    var q_giEpi_Na_init: mole {pub: in};
    var q_ptEpi_Na_init: mole {pub: in};
    var q_vc_K: mole {pub: in};
    var q_giEpi_K: mole {pub: in};
    var q_ptEpi_K: mole {pub: in};
    var q_tot_Na: mole {pub: out};
    var c_vc_Na: mol_per_L {pub: out};
    var c_gi_Na: mol_per_L {pub: out};
    var c_pt_Na: mol_per_L {pub: out};
    var c_giEpi_Na: mol_per_L {pub: out};
    var c_ptEpi_Na: mol_per_L {pub: out};
    var C_vc_Na: mM {pub: out};
    var C_gi_Na: mM {pub: out};
    var C_pt_Na: mM {pub: out};
    var C_giEpi_Na: mM {pub: out};
    var C_ptEpi_Na: mM {pub: out};
    var v_lv_W: L_per_s {pub: in};
    var v_in_W: L_per_s {pub: in};
    var v_out1_W: L_per_s {pub: in};
    var v_out2_W: L_per_s {pub: in};
    var v_gl_W: L_per_s {pub: out};
    var v_gi_W: L_per_s {pub: out};
    var v_pt_W: L_per_s {pub: out};
    var v_cc_W: L_per_s {pub: out};
    var v_in_Na: mol_per_s {pub: in};
    var v_out1_Na: mol_per_s {pub: in};
    var v_out2_Na: mol_per_s {pub: in};
    var v_gl_Na: mol_per_s {pub: out};
    var v_gi_Na: mol_per_s {pub: out};
    var v_pt_Na: mol_per_s {pub: out};
    var v_giEpi_NKE: mol_per_s {pub: out};
    var v_ptEpi_NKE: mol_per_s {pub: out};
    var u_vc_W: kPa {pub: out};
    var u_ac_W: kPa {pub: out};
    var u_pt_W: kPa {pub: out};
    var u_vc_osmotic: kPa {pub: out};
    var u_gi_osmotic: kPa {pub: out};
    var u_pt_osmotic: kPa {pub: out};
    var u_giEpi_e: J_per_C {pub: in};
    var u_ptEpi_e: J_per_C {pub: in};
    var k_gi_W: L_per_s_per_kPa {pub: in};
    var k_pt_W: L_per_s_per_kPa {pub: in};
    var k_gl_W: L_per_s_per_kPa {pub: in};
    var k_cc_W: L_per_s_per_kPa {pub: in};
    var kK_gi_Na: per_s {pub: in};
    var kK_pt_Na: per_s {pub: in};
    var kK_gl_Na: per_s {pub: in};
    var k_giEpi_NKE: mol_per_s {pub: in};
    var k_ptEpi_NKE: mol_per_s {pub: in};
    var K_Na: L_per_mol {pub: in};
    var K_K: L_per_mol {pub: in};
    var E_vc: joule {pub: in};
    var E_ac: joule {pub: in};
    var E_pt: joule {pub: in};
    var U_ac_W: litre {pub: in};
    var U_vc_W: litre {pub: in};
    var U_pt_W: litre {pub: in};
    var L_ac_W: litre {pub: in};
    var L_vc_W: litre {pub: in};
    var L_pt_W: litre {pub: in};
    ode(q_gi_W, t) = v_in_W-RT*k_gi_W*(q_vc_Na/q_vc_W-q_gi_Na/q_gi_W)-v_out1_W;
    ode(q_pt_W, t) = k_gl_W*(E_ac*(q_ac_W-U_ac_W)/sqr(L_ac_W-q_ac_W)-E_pt*(q_pt_W-U_pt_W)/sqr(L_pt_W-q_pt_W))-RT*k_pt_W*(q_vc_Na/q_vc_W-q_pt_Na/q_pt_W)-v_out2_W;
    ode(q_vc_W, t) = k_cc_W*(E_ac*(q_ac_W-U_ac_W)/sqr(L_ac_W-q_ac_W)-E_vc*(q_vc_W-U_vc_W)/sqr(L_vc_W-q_vc_W))+RT*k_gi_W*(q_vc_Na/q_vc_W-q_gi_Na/q_gi_W)+RT*k_pt_W*(q_vc_Na/q_vc_W-q_pt_Na/q_pt_W)-v_lv_W;
    ode(q_ac_W, t) = v_lv_W+k_cc_W*E_vc*(q_vc_W-U_vc_W)/sqr(L_vc_W-q_vc_W)-(k_gl_W+k_cc_W)*E_ac*(q_ac_W-U_ac_W)/sqr(L_ac_W-q_ac_W)+k_gl_W*E_pt*(q_pt_W-U_pt_W)/sqr(L_pt_W-q_pt_W);
    ode(q_gi_Na, t) = v_in_Na-kK_gi_Na*(q_gi_Na-q_giEpi_Na)-v_out1_Na;
    ode(q_giEpi_Na, t) = kK_gi_Na*(q_gi_Na-q_giEpi_Na)-3{dim}*k_giEpi_NKE*(pow(K_Na*q_giEpi_Na/q_giEpi_W, 3{dim})*sqr(K_K*q_vc_K/q_vc_W)-pow(K_Na*q_vc_Na/q_vc_W, 3{dim})*sqr(K_K*q_giEpi_K/q_giEpi_W)*exp(2{dim}*F*u_giEpi_e/RT))/((1{dim}+pow(K_Na*q_giEpi_Na/q_giEpi_W, 3{dim}))*(1{dim}+pow(K_Na*q_vc_Na/q_vc_W, 3{dim}))*(1{dim}+sqr(K_K*q_vc_K/q_vc_W))*(1{dim}+sqr(K_K*q_giEpi_K/q_giEpi_W)));
    ode(q_pt_Na, t) = kK_gl_Na*(q_vc_Na-q_pt_Na)-kK_pt_Na*(q_pt_Na-q_ptEpi_Na)-v_out2_Na;
    ode(q_ptEpi_Na, t) = kK_pt_Na*(q_pt_Na-q_ptEpi_Na)-3{dim}*k_ptEpi_NKE*(pow(K_Na*q_ptEpi_Na/q_ptEpi_W, 3{dim})*sqr(K_K*q_vc_K/q_vc_W)-pow(K_Na*q_vc_Na/q_vc_W, 3{dim})*sqr(K_K*q_ptEpi_K/q_ptEpi_W)*exp(2{dim}*F*u_ptEpi_e/RT))/((1{dim}+pow(K_Na*q_ptEpi_Na/q_ptEpi_W, 3{dim}))*(1{dim}+pow(K_Na*q_vc_Na/q_vc_W, 3{dim}))*(1{dim}+sqr(K_K*q_vc_K/q_vc_W))*(1{dim}+sqr(K_K*q_ptEpi_K/q_ptEpi_W)));
    ode(q_vc_Na, t) = 3{dim}*k_giEpi_NKE*(pow(K_Na*q_giEpi_Na/q_giEpi_W, 3{dim})*sqr(K_K*q_vc_K/q_vc_W)-pow(K_Na*q_vc_Na/q_vc_W, 3{dim})*sqr(K_K*q_giEpi_K/q_giEpi_W)*exp(2{dim}*F*u_giEpi_e/RT))/((1{dim}+pow(K_Na*q_giEpi_Na/q_giEpi_W, 3{dim}))*(1{dim}+pow(K_Na*q_vc_Na/q_vc_W, 3{dim}))*(1{dim}+sqr(K_K*q_vc_K/q_vc_W))*(1{dim}+sqr(K_K*q_giEpi_K/q_giEpi_W)))+3{dim}*k_ptEpi_NKE*(pow(K_Na*q_ptEpi_Na/q_ptEpi_W, 3{dim})*sqr(K_K*q_vc_K/q_vc_W)-pow(K_Na*q_vc_Na/q_vc_W, 3{dim})*sqr(K_K*q_ptEpi_K/q_ptEpi_W)*exp(2{dim}*F*u_ptEpi_e/RT))/((1{dim}+pow(K_Na*q_ptEpi_Na/q_ptEpi_W, 3{dim}))*(1{dim}+pow(K_Na*q_vc_Na/q_vc_W, 3{dim}))*(1{dim}+sqr(K_K*q_vc_K/q_vc_W))*(1{dim}+sqr(K_K*q_ptEpi_K/q_ptEpi_W)))-kK_gl_Na*(q_vc_Na-q_pt_Na);
    u_vc_W = E_vc*(q_vc_W-U_vc_W)/sqr(L_vc_W-q_vc_W);
    u_ac_W = E_ac*(q_ac_W-U_ac_W)/sqr(L_ac_W-q_ac_W);
    u_pt_W = E_pt*(q_pt_W-U_pt_W)/sqr(L_pt_W-q_pt_W);
    c_vc_Na = q_vc_Na/q_vc_W;
    c_gi_Na = q_gi_Na/q_gi_W;
    c_pt_Na = q_pt_Na/q_pt_W;
    c_giEpi_Na = q_giEpi_Na/q_giEpi_W;
    c_ptEpi_Na = q_ptEpi_Na/q_ptEpi_W;
    C_vc_Na = 1e3{dim}*c_vc_Na;
    C_gi_Na = 1e3{dim}*c_gi_Na;
    C_pt_Na = 1e3{dim}*c_pt_Na;
    C_giEpi_Na = 1e3{dim}*c_giEpi_Na;
    C_ptEpi_Na = 1e3{dim}*c_ptEpi_Na;
    u_gi_osmotic = RT*c_gi_Na;
    u_vc_osmotic = RT*c_vc_Na;
    u_pt_osmotic = RT*c_pt_Na;
    v_gi_W = k_gi_W*(u_vc_osmotic-u_gi_osmotic);
    v_pt_W = k_pt_W*(u_vc_osmotic-u_pt_osmotic);
    v_gl_W = k_gl_W*(u_ac_W-u_pt_W);
    v_cc_W = k_cc_W*(u_ac_W-u_vc_W);
    v_gl_Na = kK_gl_Na*(q_vc_Na-q_pt_Na);
    v_gi_Na = kK_gi_Na*(q_gi_Na-q_giEpi_Na);
    v_pt_Na = kK_pt_Na*(q_pt_Na-q_ptEpi_Na);
    v_giEpi_NKE = 3{dim}*k_giEpi_NKE*(pow(K_Na*q_giEpi_Na/q_giEpi_W, 3{dim})*sqr(K_K*q_vc_K/q_vc_W)-pow(K_Na*q_vc_Na/q_vc_W, 3{dim})*sqr(K_K*q_giEpi_K/q_giEpi_W)*exp(2{dim}*F*u_giEpi_e/RT))/((1{dim}+pow(K_Na*q_giEpi_Na/q_giEpi_W, 3{dim}))*(1{dim}+pow(K_Na*q_vc_Na/q_vc_W, 3{dim}))*(1{dim}+sqr(K_K*q_vc_K/q_vc_W))*(1{dim}+sqr(K_K*q_giEpi_K/q_giEpi_W)));
    v_ptEpi_NKE = 3{dim}*k_ptEpi_NKE*(pow(K_Na*q_ptEpi_Na/q_ptEpi_W, 3{dim})*sqr(K_K*q_vc_K/q_vc_W)-pow(K_Na*q_vc_Na/q_vc_W, 3{dim})*sqr(K_K*q_ptEpi_K/q_ptEpi_W)*exp(2{dim}*F*u_ptEpi_e/RT))/((1{dim}+pow(K_Na*q_ptEpi_Na/q_ptEpi_W, 3{dim}))*(1{dim}+pow(K_Na*q_vc_Na/q_vc_W, 3{dim}))*(1{dim}+sqr(K_K*q_vc_K/q_vc_W))*(1{dim}+sqr(K_K*q_ptEpi_K/q_ptEpi_W)));
    q_tot_W = q_ac_W+q_vc_W+q_gi_W+q_pt_W+q_giEpi_W+q_ptEpi_W;
    q_tot_Na = q_vc_Na+q_gi_Na+q_pt_Na+q_giEpi_Na+q_ptEpi_Na;
    var q_ac_W: litre {pub: out, init: q_ac_W_init};
    var q_vc_W: litre {pub: out, init: q_vc_W_init};
    var q_gi_W: litre {pub: out, init: q_gi_W_init};
    var q_pt_W: litre {pub: out, init: q_pt_W_init};
    var q_vc_Na: mole {pub: out, init: q_vc_Na_init};
    var q_gi_Na: mole {pub: out, init: q_gi_Na_init};
    var q_pt_Na: mole {pub: out, init: q_pt_Na_init};
    var q_giEpi_Na: mole {pub: out, init: q_giEpi_Na_init};
    var q_ptEpi_Na: mole {pub: out, init: q_ptEpi_Na_init};
  enddef;
enddef;
