<?xml version='1.0' encoding='UTF-8'?>
<model name="arterial_pp_nonlinear_visco" xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cellml="http://www.cellml.org/cellml/1.1#">
    <component name="pp_nonlinear_visco_type">
        <variable name="t" public_interface="in" units="second"/>
        <!-- Constitutive parameters-->
        <variable name="mu" public_interface="in" units="Js_per_m3"/>
        <variable name="rho" public_interface="in" units="Js2_per_m5"/>
        <variable name="g" public_interface="in" units="m_per_s2"/>
        <variable name="beta_g" public_interface="in" units="dimensionless"/>
        <variable name="theta" public_interface="in" units="dimensionless"/>
        <variable name="l" public_interface="in" units="metre"/>
        <variable name="r" public_interface="out" units="metre"/>
        <variable name="r_0" public_interface="in" units="metre"/>
        <variable name="u_0" public_interface="in" units="J_per_m3"/>
        <variable name="I" public_interface="out" units="Js2_per_m6"/>
        <variable name="R" public_interface="out" units="Js_per_m6"/>
        <variable name="m_tube" public_interface="in" units="dimensionless"/>
        <variable name="n_tube" public_interface="in" units="dimensionless"/>
        <!-- State Variables-->
        <variable name="u_ext" public_interface="in" units="J_per_m3"/>
        <variable name="u_in" public_interface="in" units="J_per_m3"/>
        <variable initial_value="0.0" name="v" public_interface="out" units="m3_per_s"/>
        <variable name="u" public_interface="out" units="J_per_m3"/>
        <variable initial_value="0.0" name="v_d" public_interface="out" units="m3_per_s"/>
        <variable name="u_out" public_interface="in" units="J_per_m3"/>
        <variable initial_value="0.0" name="q_C" public_interface="out" units="m3"/>
        <variable name="q" public_interface="out" units="m3"/>
        <variable name="q_0" public_interface="out" units="m3"/>
        <variable name="R_flag" public_interface="in" units="dimensionless"/>
        <variable name="I_scale" public_interface="in" units="dimensionless"/>
        <variable name="K_tube" public_interface="in" units="J_per_m3"/>
        <variable name="K_tube_visco" public_interface="in" units="Js_per_m6"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>q_0</ci>
                <apply>
                    <times/>
                    <pi/>
                    <apply>
                        <power/>
                        <ci>r_0</ci>
                        <cn cellml:units="dimensionless">2</cn>
                    </apply>
                    <ci>l</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>q</ci>
                <apply>
                    <plus/>
                    <ci>q_C</ci>
                    <ci>q_0</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>r</ci>
                <apply>
                    <root/>
                    <apply>
                        <divide/>
                        <ci>q</ci>
                        <apply>
                            <times/>
                            <pi/>
                            <ci>l</ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <!-- Constitutive Relations-->
            <!-- I = I_scale*rho*l/(pi*sqr(r));-->
            <apply>
                <eq/>
                <ci>I</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <ci>I_scale</ci>
                        <ci>rho</ci>
                        <ci>l</ci>
                    </apply>
                    <apply>
                        <times/>
                        <pi/>
                        <apply>
                            <power/>
                            <ci>r_0</ci>
                            <cn cellml:units="dimensionless">2</cn>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>R</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <cn cellml:units="dimensionless">8</cn>
                        <ci>mu</ci>
                        <ci>l</ci>
                    </apply>
                    <apply>
                        <times/>
                        <pi/>
                        <apply>
                            <power/>
                            <ci>r</ci>
                            <cn cellml:units="dimensionless">4</cn>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <!-- Conservation Laws-->
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>v</ci>
                </apply>
                <apply>
                    <divide/>
                    <apply>
                        <minus/>
                        <apply>
                            <minus/>
                            <apply>
                                <minus/>
                                <ci>u_in</ci>
                                <ci>u</ci>
                            </apply>
                            <apply>
                                <times/>
                                <apply>
                                    <divide/>
                                    <apply>
                                        <times/>
                                        <ci>R_flag</ci>
                                        <ci>R</ci>
                                    </apply>
                                    <cn cellml:units="dimensionless">2</cn>
                                </apply>
                                <ci>v</ci>
                            </apply>
                        </apply>
                        <apply>
                            <times/>
                            <ci>beta_g</ci>
                            <ci>rho</ci>
                            <ci>g</ci>
                            <ci>l</ci>
                            <apply>
                                <cos/>
                                <apply>
                                    <divide/>
                                    <apply>
                                        <times/>
                                        <ci>theta</ci>
                                        <pi/>
                                    </apply>
                                    <cn cellml:units="dimensionless">180</cn>
                                </apply>
                            </apply>
                        </apply>
                    </apply>
                    <apply>
                        <divide/>
                        <ci>I</ci>
                        <cn cellml:units="dimensionless">2</cn>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>q_C</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>v</ci>
                    <ci>v_d</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>v_d</ci>
                </apply>
                <apply>
                    <divide/>
                    <apply>
                        <minus/>
                        <apply>
                            <minus/>
                            <ci>u</ci>
                            <ci>u_out</ci>
                        </apply>
                        <apply>
                            <times/>
                            <apply>
                                <divide/>
                                <apply>
                                    <times/>
                                    <ci>R_flag</ci>
                                    <ci>R</ci>
                                </apply>
                                <cn cellml:units="dimensionless">2</cn>
                            </apply>
                            <ci>v_d</ci>
                        </apply>
                    </apply>
                    <apply>
                        <divide/>
                        <ci>I</ci>
                        <cn cellml:units="dimensionless">2</cn>
                    </apply>
                </apply>
            </apply>
            <!-- Nonlinear tube law.-->
            <apply>
                <eq/>
                <ci>u</ci>
                <apply>
                    <plus/>
                    <ci>u_0</ci>
                    <apply>
                        <times/>
                        <ci>K_tube</ci>
                        <apply>
                            <minus/>
                            <apply>
                                <power/>
                                <apply>
                                    <divide/>
                                    <ci>q</ci>
                                    <ci>q_0</ci>
                                </apply>
                                <ci>m_tube</ci>
                            </apply>
                            <apply>
                                <power/>
                                <apply>
                                    <divide/>
                                    <ci>q</ci>
                                    <ci>q_0</ci>
                                </apply>
                                <ci>n_tube</ci>
                            </apply>
                        </apply>
                    </apply>
                    <apply>
                        <times/>
                        <ci>K_tube_visco</ci>
                        <apply>
                            <minus/>
                            <ci>v</ci>
                            <ci>v_d</ci>
                        </apply>
                    </apply>
                    <ci>u_ext</ci>
                </apply>
            </apply>
        </math>
    </component>
</model>
