<?xml version='1.0' encoding='UTF-8'?>
<model name="arterial_simple_vp_nonlinear" xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cellml="http://www.cellml.org/cellml/1.1#">
    <component name="vp_simple_nonlinear_type">
        <variable name="t" public_interface="in" units="second"/>
        <!-- Constitutive parameters-->
        <variable name="I" public_interface="in" units="Js2_per_m6"/>
        <variable name="R" public_interface="in" units="Js_per_m6"/>
        <variable name="K_tube" public_interface="in" units="J_per_m3"/>
        <variable name="m_tube" public_interface="in" units="dimensionless"/>
        <variable name="n_tube" public_interface="in" units="dimensionless"/>
        <!-- State Variables-->
        <variable name="u_ext" public_interface="in" units="J_per_m3"/>
        <variable name="v_in" public_interface="in" units="m3_per_s"/>
        <variable name="u" public_interface="out" units="J_per_m3"/>
        <variable name="q_init" public_interface="in" units="m3"/>
        <variable initial_value="q_init" name="q" public_interface="out" units="m3"/>
        <variable name="q_0" public_interface="in" units="m3"/>
        <variable name="u_0" public_interface="in" units="J_per_m3"/>
        <variable initial_value="0.0" name="v" public_interface="out" units="m3_per_s"/>
        <variable name="u_out" public_interface="in" units="J_per_m3"/>
        <variable name="R_nonlinear" public_interface="out" units="Js_per_m6"/>
        <!-- IMPORTANT, I AM USING q_init in this nonlinear law. to allow freedom on the Resistance set point.-->
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>R_nonlinear</ci>
                <apply>
                    <times/>
                    <ci>R</ci>
                    <apply>
                        <power/>
                        <apply>
                            <divide/>
                            <ci>q_init</ci>
                            <ci>q</ci>
                        </apply>
                        <cn cellml:units="dimensionless">2</cn>
                    </apply>
                </apply>
            </apply>
            <!-- Conservation Laws-->
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>v</ci>
                </apply>
                <apply>
                    <divide/>
                    <apply>
                        <minus/>
                        <apply>
                            <minus/>
                            <ci>u</ci>
                            <ci>u_out</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>R_nonlinear</ci>
                            <ci>v</ci>
                        </apply>
                    </apply>
                    <ci>I</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>q</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>v_in</ci>
                    <ci>v</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>u</ci>
                <apply>
                    <plus/>
                    <ci>u_0</ci>
                    <ci>u_ext</ci>
                    <apply>
                        <times/>
                        <ci>K_tube</ci>
                        <apply>
                            <minus/>
                            <apply>
                                <power/>
                                <apply>
                                    <divide/>
                                    <ci>q</ci>
                                    <ci>q_0</ci>
                                </apply>
                                <ci>m_tube</ci>
                            </apply>
                            <apply>
                                <power/>
                                <apply>
                                    <divide/>
                                    <ci>q</ci>
                                    <ci>q_0</ci>
                                </apply>
                                <ci>n_tube</ci>
                            </apply>
                        </apply>
                    </apply>
                </apply>
            </apply>
        </math>
    </component>
</model>
