<?xml version='1.0' encoding='UTF-8'?>
<model name="Min_junction_vp_noI" xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cellml="http://www.cellml.org/cellml/1.1#">
    <component name="vp_Min_noI_type">
        <variable name="t" public_interface="in" units="second"/>
        <variable name="q_init" public_interface="in" units="litre"/>
        <variable name="q_0" public_interface="in" units="litre"/>
        <variable initial_value="q_init" name="q" public_interface="out" units="litre"/>
        <variable name="u" public_interface="out" units="kPa"/>
        <variable name="u_0" public_interface="in" units="kPa"/>
        <variable name="v" public_interface="out" units="L_per_s"/>
        <!-- constitutive parameters
 var E: kPa_per_L {pub: in};-->
        <variable name="C" public_interface="in" units="L_per_kPa"/>
        <variable name="R" public_interface="in" units="kPa_s_per_L"/>
        <!-- boundary conditions-->
        <variable name="v_in_sum" public_interface="in" units="L_per_s"/>
        <variable name="u_out" public_interface="in" units="kPa"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>q</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>v_in_sum</ci>
                    <ci>v</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>v</ci>
                <apply>
                    <divide/>
                    <apply>
                        <minus/>
                        <ci>u</ci>
                        <ci>u_out</ci>
                    </apply>
                    <ci>R</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>u</ci>
                <apply>
                    <plus/>
                    <ci>u_0</ci>
                    <apply>
                        <divide/>
                        <apply>
                            <minus/>
                            <ci>q</ci>
                            <ci>q_0</ci>
                        </apply>
                        <ci>C</ci>
                    </apply>
                </apply>
            </apply>
        </math>
    </component>
</model>
