<?xml version='1.0' encoding='UTF-8'?>
<model name="Nout_junction_pv_noI_SI" xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cellml="http://www.cellml.org/cellml/1.1#">
    <component name="pv_Nout_noI_type2">
        <variable name="t" public_interface="in" units="second"/>
        <variable name="q_init" public_interface="in" units="m3"/>
        <variable name="q_0" public_interface="in" units="m3"/>
        <variable initial_value="q_init" name="q" public_interface="out" units="m3"/>
        <variable name="u" public_interface="out" units="J_per_m3"/>
        <variable name="u_0" public_interface="in" units="J_per_m3"/>
        <variable name="v" public_interface="out" units="m3_per_s"/>
        <!-- constitutive parameters
 var E: J_per_m6 {pub: in};-->
        <variable name="C" public_interface="in" units="m6_per_J"/>
        <variable name="R" public_interface="in" units="Js_per_m6"/>
        <!-- boundary conditions-->
        <variable name="u_in" public_interface="in" units="J_per_m3"/>
        <variable name="v_out_sum" public_interface="in" units="m3_per_s"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>q</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>v</ci>
                    <ci>v_out_sum</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>v</ci>
                <apply>
                    <divide/>
                    <apply>
                        <minus/>
                        <ci>u_in</ci>
                        <ci>u</ci>
                    </apply>
                    <ci>R</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>u</ci>
                <apply>
                    <plus/>
                    <ci>u_0</ci>
                    <apply>
                        <divide/>
                        <apply>
                            <minus/>
                            <ci>q</ci>
                            <ci>q_0</ci>
                        </apply>
                        <ci>C</ci>
                    </apply>
                </apply>
            </apply>
        </math>
    </component>
</model>
