<?xml version='1.0' encoding='UTF-8'?>
<model name="arteriole_vp_micro" xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cellml="http://www.cellml.org/cellml/1.1#">
    <component name="vp_simple_type__arteriole_vp_micro">
        <variable name="t" public_interface="in" units="second"/>
        <!-- Constitutive parameters-->
        <variable name="I" public_interface="in" units="Js2_per_m6"/>
        <variable name="C" public_interface="in" units="m6_per_J"/>
        <variable name="R" public_interface="in" units="Js_per_m6"/>
        <variable name="R_v" public_interface="out" units="Js_per_m6"/>
        <!-- State Variables-->
        <variable name="q_0" public_interface="in" units="m3"/>
        <variable name="u_0" public_interface="in" units="J_per_m3"/>
        <variable name="u_ext" public_interface="in" units="J_per_m3"/>
        <variable name="v_in" public_interface="in" units="m3_per_s"/>
        <variable name="u" public_interface="out" units="J_per_m3"/>
        <variable initial_value="0.0" name="q_C" public_interface="out" units="m3"/>
        <variable name="u_C" public_interface="out" units="J_per_m3"/>
        <variable initial_value="0.0" name="v" public_interface="out" units="m3_per_s"/>
        <variable name="u_out" public_interface="in" units="J_per_m3"/>
        <variable name="q" public_interface="out" units="m3"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>q</ci>
                <apply>
                    <plus/>
                    <ci>q_C</ci>
                    <ci>q_0</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>R_v</ci>
                <apply>
                    <divide/>
                    <cn cellml:units="second">0.01</cn>
                    <ci>C</ci>
                </apply>
            </apply>
            <!-- Conservation Laws-->
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>v</ci>
                </apply>
                <apply>
                    <divide/>
                    <apply>
                        <minus/>
                        <apply>
                            <minus/>
                            <ci>u</ci>
                            <ci>u_out</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>R</ci>
                            <ci>v</ci>
                        </apply>
                    </apply>
                    <ci>I</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>q_C</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>v_in</ci>
                    <ci>v</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>u_C</ci>
                <apply>
                    <divide/>
                    <ci>q_C</ci>
                    <ci>C</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>u</ci>
                <apply>
                    <plus/>
                    <ci>u_0</ci>
                    <ci>u_C</ci>
                    <ci>u_ext</ci>
                    <apply>
                        <times/>
                        <ci>R_v</ci>
                        <apply>
                            <minus/>
                            <ci>v_in</ci>
                            <ci>v</ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
        </math>
    </component>
</model>
