<?xml version='1.0' encoding='UTF-8'?>
<model name="material_prop_visco_const_ven_Olufsen2000_v01" xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cellml="http://www.cellml.org/cellml/1.1#">
    <component name="material_prop_visco_const_ven_type">
        <variable name="t" public_interface="in" units="second"/>
        <variable name="l" public_interface="in" units="metre"/>
        <variable name="r_0" public_interface="in" units="metre"/>
        <variable name="hr_ratio" public_interface="in" units="dimensionless"/>
        <variable name="E" public_interface="in" units="J_per_m3"/>
        <variable name="K_m" public_interface="in" units="Js_per_m3"/>
        <variable name="Gamma" public_interface="out" units="Js_per_m3"/>
        <variable name="SMvolfrac_ven" public_interface="in" units="dimensionless"/>
        <variable name="nu" public_interface="in" units="dimensionless"/>
        <variable name="K_tube" public_interface="out" units="J_per_m3"/>
        <variable name="K_tube_visco" public_interface="out" units="Js_per_m6"/>
        <!-- Gamma is the wall viscosity
 evaluated as the product of the viscoelastic parameter K_m and the volume fraction of smooth muscle SMvolfrac
 Gamma = 0.08{dimensionless}*K_m;-->
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>Gamma</ci>
                <apply>
                    <times/>
                    <ci>SMvolfrac_ven</ci>
                    <ci>K_m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>K_tube</ci>
                <apply>
                    <times/>
                    <apply>
                        <divide/>
                        <ci>E</ci>
                        <apply>
                            <times/>
                            <cn cellml:units="dimensionless">12</cn>
                            <apply>
                                <minus/>
                                <cn cellml:units="dimensionless">1</cn>
                                <apply>
                                    <power/>
                                    <ci>nu</ci>
                                    <cn cellml:units="dimensionless">2</cn>
                                </apply>
                            </apply>
                        </apply>
                    </apply>
                    <apply>
                        <power/>
                        <ci>hr_ratio</ci>
                        <cn cellml:units="dimensionless">3</cn>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>K_tube_visco</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <apply>
                            <divide/>
                            <cn cellml:units="dimensionless">2</cn>
                            <cn cellml:units="dimensionless">3</cn>
                        </apply>
                        <ci>Gamma</ci>
                        <ci>h</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>l</ci>
                        <pi/>
                        <apply>
                            <power/>
                            <ci>r_0</ci>
                            <cn cellml:units="dimensionless">3</cn>
                        </apply>
                    </apply>
                </apply>
            </apply>
        </math>
    </component>
</model>
