<?xml version='1.0' encoding='UTF-8'?>
<model name="material_prop_visco_fromPWV_Olufsen2000_v01" xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cellml="http://www.cellml.org/cellml/1.1#">
    <component name="material_prop_visco_fromPWV_type">
        <variable name="t" public_interface="in" units="second"/>
        <variable name="rho" public_interface="in" units="Js2_per_m5"/>
        <variable name="m_tube" public_interface="in" units="dimensionless"/>
        <variable name="n_tube" public_interface="in" units="dimensionless"/>
        <variable name="l" public_interface="in" units="metre"/>
        <variable name="r_0" public_interface="in" units="metre"/>
        <variable name="k_1" public_interface="in" units="J_per_m3"/>
        <variable name="k_2" public_interface="in" units="per_m"/>
        <variable name="k_3" public_interface="in" units="J_per_m3"/>
        <variable name="c0" public_interface="out" units="m_per_s"/>
        <variable name="K_m" public_interface="in" units="Js_per_m3"/>
        <variable name="Gamma" public_interface="out" units="Js_per_m3"/>
        <variable name="SMvolfrac_art" public_interface="in" units="dimensionless"/>
        <variable name="K_tube" public_interface="out" units="J_per_m3"/>
        <variable name="K_tube_visco" public_interface="out" units="Js_per_m6"/>
        <!-- Gamma is the wall viscosity
 evaluated as the product of the viscoelastic parameter K_m and the volume fraction of smooth muscle SMvolfrac
 Gamma = 0.1{dimensionless}*K_m;-->
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>Gamma</ci>
                <apply>
                    <times/>
                    <ci>SMvolfrac_art</ci>
                    <ci>K_m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>c0</ci>
                <apply>
                    <root/>
                    <apply>
                        <times/>
                        <apply>
                            <divide/>
                            <cn cellml:units="dimensionless">2</cn>
                            <apply>
                                <times/>
                                <cn cellml:units="dimensionless">3</cn>
                                <ci>rho</ci>
                            </apply>
                        </apply>
                        <apply>
                            <plus/>
                            <apply>
                                <times/>
                                <ci>k_1</ci>
                                <apply>
                                    <exp/>
                                    <apply>
                                        <times/>
                                        <ci>k_2</ci>
                                        <ci>r_0</ci>
                                    </apply>
                                </apply>
                            </apply>
                            <ci>k_3</ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>K_tube</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <ci>rho</ci>
                        <apply>
                            <power/>
                            <ci>c0</ci>
                            <cn cellml:units="dimensionless">2</cn>
                        </apply>
                    </apply>
                    <apply>
                        <minus/>
                        <ci>m_tube</ci>
                        <ci>n_tube</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>K_tube_visco</ci>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <apply>
                            <divide/>
                            <cn cellml:units="dimensionless">2</cn>
                            <cn cellml:units="dimensionless">3</cn>
                        </apply>
                        <ci>Gamma</ci>
                        <ci>h</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>l</ci>
                        <pi/>
                        <apply>
                            <power/>
                            <ci>r_0</ci>
                            <cn cellml:units="dimensionless">3</cn>
                        </apply>
                    </apply>
                </apply>
            </apply>
        </math>
    </component>
</model>
