<?xml version='1.0' encoding='UTF-8'?>
<model name="terminal_pp" xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cellml="http://www.cellml.org/cellml/1.1#">
    <component name="pp_T_fixed_I_type">
        <variable name="t" public_interface="in" units="second"/>
        <!-- Constitutive parameters-->
        <variable name="I_T" public_interface="out" units="Js2_per_m6"/>
        <variable name="R_v" public_interface="out" units="Js_per_m6"/>
        <variable name="R_T" public_interface="in" units="Js_per_m6"/>
        <variable name="C_T" public_interface="in" units="m6_per_J"/>
        <!-- State Variables-->
        <variable name="u_ext" public_interface="in" units="J_per_m3"/>
        <variable initial_value="0.0" name="v" public_interface="out" units="m3_per_s"/>
        <variable name="u_in" public_interface="in" units="J_per_m3"/>
        <variable name="u" public_interface="out" units="J_per_m3"/>
        <variable name="u_C" public_interface="out" units="J_per_m3"/>
        <!-- v_T is the output flow to the venous side-->
        <variable initial_value="0.0" name="v_T" public_interface="out" units="m3_per_s"/>
        <variable name="u_out" public_interface="in" units="J_per_m3"/>
        <variable name="q_us" public_interface="in" units="m3"/>
        <variable name="q_init" public_interface="in" units="m3"/>
        <variable initial_value="q_init" name="q" public_interface="out" units="m3"/>
        <!-- Improve this R_v estimate?-->
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>R_v</ci>
                <apply>
                    <divide/>
                    <cn cellml:units="second">0.01</cn>
                    <ci>C_T</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>I_T</ci>
                <cn cellml:units="Js2_per_m6" type="e-notation">1<sep/>-6</cn>
            </apply>
            <!-- Conservation Laws-->
            <!-- For now terminals don't have a gravity effect, change this for leg terminals-->
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>q</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>v</ci>
                    <ci>v_T</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>u_C</ci>
                <apply>
                    <divide/>
                    <apply>
                        <minus/>
                        <ci>q</ci>
                        <ci>q_us</ci>
                    </apply>
                    <ci>C_T</ci>
                </apply>
            </apply>
            <!-- + u_ext;-->
            <apply>
                <eq/>
                <ci>u</ci>
                <apply>
                    <plus/>
                    <ci>u_C</ci>
                    <ci>u_ext</ci>
                    <apply>
                        <times/>
                        <ci>R_v</ci>
                        <apply>
                            <minus/>
                            <ci>v</ci>
                            <ci>v_T</ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>v</ci>
                </apply>
                <apply>
                    <divide/>
                    <apply>
                        <minus/>
                        <apply>
                            <minus/>
                            <ci>u_in</ci>
                            <ci>u</ci>
                        </apply>
                        <apply>
                            <divide/>
                            <apply>
                                <times/>
                                <ci>v</ci>
                                <ci>R_T</ci>
                            </apply>
                            <cn cellml:units="dimensionless">2</cn>
                        </apply>
                    </apply>
                    <ci>I_T</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>v_T</ci>
                </apply>
                <apply>
                    <divide/>
                    <apply>
                        <minus/>
                        <apply>
                            <minus/>
                            <ci>u</ci>
                            <ci>u_out</ci>
                        </apply>
                        <apply>
                            <divide/>
                            <apply>
                                <times/>
                                <ci>v_T</ci>
                                <ci>R_T</ci>
                            </apply>
                            <cn cellml:units="dimensionless">2</cn>
                        </apply>
                    </apply>
                    <ci>I_T</ci>
                </apply>
            </apply>
        </math>
    </component>
</model>
