<?xml version='1.0' encoding='UTF-8'?>
<model name="terminal_pp_RICRI_nonlinear" xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cellml="http://www.cellml.org/cellml/1.1#">
    <component name="pp_T_RICRI_nonlinear_type">
        <variable name="t" public_interface="in" units="second"/>
        <!-- Constitutive parameters-->
        <variable name="I_T_1" public_interface="in" units="Js2_per_m6"/>
        <variable name="I_T_2" public_interface="in" units="Js2_per_m6"/>
        <variable name="R_T" public_interface="in" units="Js_per_m6"/>
        <variable name="R_T_1" units="Js_per_m6"/>
        <variable name="R_T_2" units="Js_per_m6"/>
        <variable name="frac_R_T_1_of_R_T" public_interface="in" units="dimensionless"/>
        <!-- var C_T: m6_per_J {pub: in};-->
        <variable name="K_tube" public_interface="in" units="J_per_m3"/>
        <variable name="m_tube" public_interface="in" units="dimensionless"/>
        <variable name="n_tube" public_interface="in" units="dimensionless"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>R_T_1</ci>
                <apply>
                    <times/>
                    <ci>frac_R_T_1_of_R_T</ci>
                    <ci>R_T</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>R_T_2</ci>
                <apply>
                    <times/>
                    <apply>
                        <minus/>
                        <cn cellml:units="dimensionless">1</cn>
                        <ci>frac_R_T_1_of_R_T</ci>
                    </apply>
                    <ci>R_T</ci>
                </apply>
            </apply>
        </math>
        <!-- State Variables-->
        <variable name="u_ext" public_interface="in" units="J_per_m3"/>
        <variable initial_value="0.0" name="v" public_interface="out" units="m3_per_s"/>
        <variable name="u_in" public_interface="in" units="J_per_m3"/>
        <variable name="u" public_interface="out" units="J_per_m3"/>
        <!-- v_T is the output flow to the venous side-->
        <variable initial_value="0.0" name="v_T" public_interface="out" units="m3_per_s"/>
        <variable name="u_out" public_interface="in" units="J_per_m3"/>
        <variable initial_value="q_init" name="q" public_interface="out" units="m3"/>
        <variable name="q_us" public_interface="in" units="m3"/>
        <variable name="q_init" public_interface="in" units="m3"/>
        <!-- Conservation Laws-->
        <!-- For now terminals don't have a gravity effect, change this for leg terminals-->
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>q</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>v</ci>
                    <ci>v_T</ci>
                </apply>
            </apply>
            <!-- rearrange to try to make opencor recognise an ode
 ode(q, t) = (u_in-(q/C_T+u_ext))/R_T_1-(q/C_T+u_ext-u_out)/R_T_2;-->
            <!-- u           = q/C_T+u_ext;-->
            <apply>
                <eq/>
                <ci>u</ci>
                <apply>
                    <plus/>
                    <apply>
                        <times/>
                        <ci>K_tube</ci>
                        <apply>
                            <minus/>
                            <apply>
                                <power/>
                                <apply>
                                    <divide/>
                                    <ci>q</ci>
                                    <ci>q_us</ci>
                                </apply>
                                <ci>m_tube</ci>
                            </apply>
                            <apply>
                                <power/>
                                <apply>
                                    <divide/>
                                    <ci>q</ci>
                                    <ci>q_us</ci>
                                </apply>
                                <ci>n_tube</ci>
                            </apply>
                        </apply>
                    </apply>
                    <ci>u_ext</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>v</ci>
                </apply>
                <apply>
                    <divide/>
                    <apply>
                        <minus/>
                        <apply>
                            <minus/>
                            <ci>u_in</ci>
                            <ci>u</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>R_T_1</ci>
                            <ci>v</ci>
                        </apply>
                    </apply>
                    <ci>I_T_1</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>v_T</ci>
                </apply>
                <apply>
                    <divide/>
                    <apply>
                        <minus/>
                        <apply>
                            <minus/>
                            <ci>u</ci>
                            <ci>u_out</ci>
                        </apply>
                        <apply>
                            <times/>
                            <ci>R_T_2</ci>
                            <ci>v_T</ci>
                        </apply>
                    </apply>
                    <ci>I_T_2</ci>
                </apply>
            </apply>
        </math>
    </component>
</model>
