def model CardiovascularSystem as
  def unit s2 as
    unit second {expo: 2};
  enddef;
  def unit Hz as
    unit second {expo: -1};
  enddef;
  def unit millis as
    unit second {pref: milli};
  enddef;
  def unit per_millis as
    unit millis {expo: -1};
  enddef;
  def unit mm as
    unit metre {pref: milli};
  enddef;
  def unit m2 as
    unit metre {expo: 2};
  enddef;
  def unit mm2 as
    unit metre {expo: 2, pref: milli};
  enddef;
  def unit m3 as
    unit metre {expo: 3};
  enddef;
  def unit m4 as
    unit metre {expo: 4};
  enddef;
  def unit mm3 as
    unit metre {expo: 3, pref: milli};
  enddef;
  def unit J_per_s as
    unit joule;
    unit second {expo: -1};
  enddef;
  def unit mol_per_s as
    unit mole;
    unit second {expo: -1};
  enddef;
  def unit mmol_per_s as
    unit mole {pref: milli};
    unit second {expo: -1};
  enddef;
  def unit umol_per_s as
    unit mole {pref: micro};
    unit second {expo: -1};
  enddef;
  def unit C_per_s as
    unit coulomb;
    unit second {expo: -1};
  enddef;
  def unit mC_per_s as
    unit coulomb {pref: milli};
    unit second {expo: -1};
  enddef;
  def unit uC_per_s as
    unit coulomb {pref: micro};
    unit second {expo: -1};
  enddef;
  def unit nC_per_s as
    unit coulomb {pref: nano};
    unit second {expo: -1};
  enddef;
  def unit Cm_per_millis as
    unit coulomb;
    unit metre;
    unit second {expo: -1, pref: milli};
  enddef;
  def unit m_per_s as
    unit metre;
    unit second {expo: -1};
  enddef;
  def unit mm_per_s as
    unit metre {pref: milli};
    unit second {expo: -1};
  enddef;
  def unit um_per_s as
    unit metre {pref: milli};
    unit second {expo: -1};
  enddef;
  def unit rad_per_s as
    unit radian;
    unit second {expo: -1};
  enddef;
  def unit m3_per_s as
    unit metre {expo: 3};
    unit second {expo: -1};
  enddef;
  def unit mL as
    unit litre {pref: milli};
  enddef;
  def unit per_milliL_s as
    unit litre {expo: -1, pref: milli};
    unit second {expo: -1};
  enddef;
  def unit s_per_m3 as
    unit second;
    unit metre {expo: -3};
  enddef;
  def unit s_per_milliV as
    unit second;
    unit volt {expo: -1, pref: milli};
  enddef;
  def unit s_per_millis as
    unit second;
    unit second {expo: -1, pref: milli};
  enddef;
  def unit millis_per_s as
    unit second {pref: milli};
    unit second {expo: -1};
  enddef;
  def unit mm3_per_s as
    unit metre {expo: 3, pref: milli};
    unit second {expo: -1};
  enddef;
  def unit l_per_s as
    unit litre;
    unit second {expo: -1};
  enddef;
  def unit per_ml_s as
    unit litre {expo: -1, pref: milli};
    unit second {expo: -1};
  enddef;
  def unit per_m3_s as
    unit metre {expo: -3};
    unit second {expo: -1};
  enddef;
  def unit J_per_mol as
    unit joule;
    unit mole {expo: -1};
  enddef;
  def unit J_per_kmol_K as
    unit joule;
    unit mole {expo: -1, pref: kilo};
    unit kelvin {expo: -1};
  enddef;
  def unit J_per_M as
    unit J_per_mol;
  enddef;
  def unit J_per_C as
    unit joule;
    unit coulomb {expo: -1};
  enddef;
  def unit J_per_C_s as
    unit joule;
    unit coulomb {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit J_per_m as
    unit joule;
    unit metre {expo: -1};
  enddef;
  def unit J_per_m3 as
    unit joule;
    unit metre {expo: -3};
  enddef;
  def unit mmHg as
    unit pascal {mult: 133.32};
  enddef;
  def unit per_mmHg as
    unit mmHg {expo: -1};
  enddef;
  def unit mmHg2 as
    unit mmHg {expo: 2};
  enddef;
  def unit Pa_per_mmHg as
    unit pascal;
    unit mmHg {expo: -1};
  enddef;
  def unit m3_per_J as
    unit joule {expo: -1};
    unit metre {expo: 3};
  enddef;
  def unit J_per_m3s as
    unit joule;
    unit metre {expo: -3};
    unit second {expo: -1};
  enddef;
  def unit m3_per_Js as
    unit joule {expo: -1};
    unit metre {expo: 3};
    unit second {expo: -1};
  enddef;
  def unit J2_per_m6 as
    unit joule {expo: 2};
    unit metre {expo: -6};
  enddef;
  def unit Js2_per_C2 as
    unit second {expo: 2};
    unit joule;
    unit coulomb {expo: -2};
  enddef;
  def unit Js2_per_mol2 as
    unit joule;
    unit second {expo: 2};
    unit mole {expo: -2};
  enddef;
  def unit Js_per_mol2 as
    unit joule;
    unit second;
    unit mole {expo: -2};
  enddef;
  def unit Js_per_C2 as
    unit joule;
    unit second;
    unit coulomb {expo: -2};
  enddef;
  def unit J_per_mol2 as
    unit joule;
    unit mole {expo: -2};
  enddef;
  def unit C2_per_J_s as
    unit coulomb {expo: 2};
    unit joule {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit J_per_C2 as
    unit joule;
    unit coulomb {expo: -2};
  enddef;
  def unit C2_per_J as
    unit joule;
    unit coulomb {expo: -2};
  enddef;
  def unit mol_per_m3 as
    unit mole;
    unit metre {expo: -3};
  enddef;
  def unit M as
    unit mole;
    unit litre {expo: -1};
  enddef;
  def unit mM as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit milliM as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit uM as
    unit mole {pref: micro};
    unit litre {expo: -1};
  enddef;
  def unit kg_per_m3 as
    unit kilogram;
    unit metre {expo: -3};
  enddef;
  def unit m3_per_kg as
    unit kilogram {expo: -1};
    unit metre {expo: 3};
  enddef;
  def unit per_m3 as
    unit metre {expo: -3};
  enddef;
  def unit mol_per_m2_s as
    unit mole;
    unit metre {expo: -2};
    unit second {expo: -1};
  enddef;
  def unit mM_m_per_s as
    unit mM;
    unit metre;
    unit second {expo: -1};
  enddef;
  def unit J_per_m2_s as
    unit joule;
    unit metre {expo: -2};
    unit second {expo: -1};
  enddef;
  def unit Js_per_m4 as
    unit joule;
    unit second;
    unit metre {expo: -4};
  enddef;
  def unit mM_per_s as
    unit mM;
    unit second {expo: -1};
  enddef;
  def unit per_s as
    unit second {expo: -1};
  enddef;
  def unit per_s2 as
    unit second {expo: -2};
  enddef;
  def unit per_mM_s as
    unit mM {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit m6_per_mol2_s as
    unit metre {expo: 6};
    unit mole {expo: -2};
    unit second {expo: -1};
  enddef;
  def unit m3_per_mol as
    unit metre {expo: 3};
    unit mole {expo: -1};
  enddef;
  def unit mol_per_m3_s as
    unit mole;
    unit metre {expo: -3};
    unit second {expo: -1};
  enddef;
  def unit per_mol as
    unit mole {expo: -1};
  enddef;
  def unit J_per_mol_K as
    unit joule;
    unit mole {expo: -1};
    unit kelvin {expo: -1};
  enddef;
  def unit m2_per_s as
    unit metre {expo: 2};
    unit second {expo: -1};
  enddef;
  def unit per_C as
    unit coulomb {expo: -1};
  enddef;
  def unit per_m as
    unit metre {expo: -1};
  enddef;
  def unit per_mM as
    unit mM {expo: -1};
  enddef;
  def unit Js2_per_m2 as
    unit joule;
    unit second {expo: 2};
    unit metre {expo: -2};
  enddef;
  def unit Js_per_m2 as
    unit joule;
    unit second;
    unit metre {expo: -2};
  enddef;
  def unit J_per_m2 as
    unit joule;
    unit metre {expo: -2};
  enddef;
  def unit m_per_s2 as
    unit metre;
    unit second {expo: -2};
  enddef;
  def unit rad_per_s2 as
    unit radian;
    unit second {expo: -2};
  enddef;
  def unit Js_per_m3 as
    unit joule;
    unit second;
    unit metre {expo: -3};
  enddef;
  def unit Js2_per_m5 as
    unit joule;
    unit second {expo: 2};
    unit metre {expo: -5};
  enddef;
  def unit m5_per_Js2 as
    unit joule {expo: -1};
    unit second {expo: -2};
    unit metre {expo: 5};
  enddef;
  def unit J_per_m6 as
    unit joule;
    unit metre {expo: -6};
  enddef;
  def unit m6_per_J as
    unit metre {expo: 6};
    unit joule {expo: -1};
  enddef;
  def unit m6_per_Js as
    unit metre {expo: 6};
    unit joule {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit mm6_per_J as
    unit metre {expo: 6, pref: milli};
    unit joule {expo: -1};
  enddef;
  def unit Js2_per_m9 as
    unit joule;
    unit second {expo: 2};
    unit metre {expo: -9};
  enddef;
  def unit m6s_per_J as
    unit second;
    unit metre {expo: 6};
    unit joule {expo: -1};
  enddef;
  def unit Js_per_m6 as
    unit joule;
    unit second;
    unit metre {expo: -6};
  enddef;
  def unit Js2_per_m6 as
    unit joule;
    unit second {expo: 2};
    unit metre {expo: -6};
  enddef;
  def unit m3_per_s2 as
    unit metre {expo: 3};
    unit second {expo: -2};
  enddef;
  def unit mm3_per_s2 as
    unit metre {expo: 3, pref: milli};
    unit second {expo: -2};
  enddef;
  def unit per_mm3 as
    unit metre {expo: -3, pref: milli};
  enddef;
  def unit UnitValve as
    unit metre {expo: 3};
    unit second {expo: -1};
    unit J_per_m3 {expo: -0.5};
  enddef;
  def unit J_per_m9 as
    unit joule;
    unit metre {expo: -9};
  enddef;
  def unit milliV as
    unit volt {pref: milli};
  enddef;
  def unit per_milliV as
    unit milliV {expo: -1};
  enddef;
  def unit millis_per_milliV as
    unit milliV {expo: -1};
    unit millis;
  enddef;
  def unit per_V as
    unit volt {expo: -1};
  enddef;
  def unit milliV_per_V as
    unit milliV;
    unit volt {expo: -1};
  enddef;
  def unit V_per_milliV as
    unit volt;
    unit milliV {expo: -1};
  enddef;
  def unit V_per_s as
    unit volt;
    unit second {expo: -1};
  enddef;
  def unit milliV_per_kiloV as
    unit volt {pref: milli};
    unit volt {expo: -1, pref: kilo};
  enddef;
  def unit V2 as
    unit volt {expo: 2};
  enddef;
  def unit milliV2 as
    unit volt {expo: 2, pref: milli};
  enddef;
  def unit millimol as
    unit mole {pref: milli};
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit per_millimolar as
    unit millimolar {expo: -1};
  enddef;
  def unit per_millimolar_s as
    unit millimolar {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit per_millimolar2_s as
    unit millimolar {expo: -2};
    unit second {expo: -1};
  enddef;
  def unit millimolar_per_s as
    unit millimolar;
    unit second {expo: -1};
  enddef;
  def unit millimolar_per_megamolar as
    unit millimolar;
    unit mole {expo: -1, pref: mega};
    unit litre;
  enddef;
  def unit per_millimol_milliS as
    unit mole {expo: -1, pref: milli};
    unit siemens {expo: -1, pref: milli};
  enddef;
  def unit per_millimol_millis as
    unit mole {expo: -1, pref: milli};
    unit second {expo: -1, pref: milli};
  enddef;
  def unit per_millimol_s as
    unit mole {expo: -1, pref: milli};
    unit second {expo: -1};
  enddef;
  def unit microm as
    unit metre {pref: micro};
  enddef;
  def unit microS as
    unit siemens {pref: micro};
  enddef;
  def unit microm3 as
    unit microm {expo: 3};
  enddef;
  def unit m3_per_microm3 as
    unit m3;
    unit microm3 {expo: -1};
  enddef;
  def unit picoF as
    unit farad {pref: pico};
  enddef;
  def unit S_per_F as
    unit siemens;
    unit farad {expo: -1};
  enddef;
  def unit m3_per_Fs as
    unit metre {expo: 3};
    unit farad {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit A_per_F as
    unit ampere;
    unit farad {expo: -1};
  enddef;
  def unit megaOhm as
    unit ohm {pref: mega};
  enddef;
  def unit nanoA as
    unit ampere {pref: nano};
  enddef;
  def unit nanoA_per_milliA as
    unit ampere {pref: nano};
    unit ampere {expo: -1, pref: milli};
  enddef;
  def unit nanoA_per_A as
    unit ampere {pref: nano};
    unit ampere {expo: -1};
  enddef;
  def unit A_per_nanoA as
    unit ampere {expo: -1, pref: nano};
    unit ampere;
  enddef;
  def unit C_per_mol as
    unit coulomb;
    unit mole {expo: -1};
  enddef;
  def unit m3_per_J_millis as
    unit metre {expo: 3};
    unit joule {expo: -1};
    unit second {expo: -1, pref: milli};
  enddef;
  def unit m3_per_mol_millis as
    unit metre {expo: 3};
    unit mole {expo: -1};
    unit second {expo: -1, pref: milli};
  enddef;
  def unit m3_per_millimol_s as
    unit metre {expo: 3};
    unit second {expo: -1};
    unit mole {expo: -1, pref: milli};
  enddef;
  def unit millimol_per_m3 as
    unit metre {expo: -3};
    unit mole {pref: milli};
  enddef;
  def unit Hz2 as
    unit second {expo: -2};
  enddef;
  def unit cm as
    unit metre {pref: centi};
  enddef;
  def unit J_per_m4_s as
    unit metre {expo: -4};
    unit joule;
    unit second {expo: -1};
  enddef;
  def unit m3_per_mol_per_sec as
    unit metre {expo: 3};
    unit mole {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit mol_per_m3_per_kPa as
    unit mole;
    unit metre {expo: -3};
    unit pascal {expo: -1, pref: kilo};
  enddef;
  def unit mol_per_m3_per_Pa as
    unit mole;
    unit metre {expo: -3};
    unit pascal {expo: -1};
  enddef;
  def unit m3_per_mol_per_s as
    unit metre {expo: 3};
    unit mole {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit mol_per_m3_per_s as
    unit mole;
    unit metre {expo: -3};
    unit second {expo: -1};
  enddef;
  def unit dim as
    unit dimensionless;
  enddef;
  def unit fmol as
    unit mole {pref: femto};
  enddef;
  def unit per_fmol as
    unit fmol {expo: -1};
  enddef;
  def unit nJ_per_s as
    unit joule {pref: nano};
    unit second {expo: -1};
  enddef;
  def unit fmol_per_s as
    unit fmol;
    unit second {expo: -1};
  enddef;
  def unit nC_per_fmol as
    unit coulomb {pref: nano};
    unit fmol {expo: -1};
  enddef;
  def unit nC as
    unit coulomb {pref: nano};
  enddef;
  def unit nJ_per_fmol as
    unit joule {pref: nano};
    unit fmol {expo: -1};
  enddef;
  def unit nJ_per_nC as
    unit joule {pref: nano};
    unit nC {expo: -1};
  enddef;
  def unit fC as
    unit coulomb {pref: femto};
  enddef;
  def unit fF as
    unit farad {pref: femto};
  enddef;
  def unit volt_per_sec as
    unit second {expo: -1};
    unit volt;
  enddef;
  def unit J_per_K_per_mol as
    unit joule;
    unit kelvin {expo: -1};
    unit mole {expo: -1};
  enddef;
  def unit nS as
    unit siemens {pref: nano};
  enddef;
  def unit nSmV as
    unit nS;
    unit mV;
  enddef;
  def unit per_ms as
    unit second {expo: -1, pref: milli};
  enddef;
  def unit mM4 as
    unit mM {expo: 4};
  enddef;
  def unit mM_per_ms as
    unit mM;
    unit ms {expo: -1};
  enddef;
  def unit mMms as
    unit mM;
    unit ms;
  enddef;
  def unit per_mMms as
    unit mMms {expo: -1};
  enddef;
  def unit molar as
    unit mole;
    unit litre {expo: -1};
  enddef;
  def unit micromolar as
    unit mole {pref: micro};
    unit litre {expo: -1};
  enddef;
  def unit nanomolar as
    unit mole {pref: nano};
    unit litre {expo: -1};
  enddef;
  def unit ms as
    unit second {pref: milli};
  enddef;
  def unit m_cubed as
    unit metre {pref: kilo};
  enddef;
  def unit mV as
    unit volt {pref: milli};
  enddef;
  def unit m_cubed_per_second as
    unit m_cubed;
    unit per_s;
  enddef;
  def unit micromolar_m_cubed as
    unit micromolar;
    unit m_cubed;
  enddef;
  def unit C as
    unit ampere;
    unit second;
  enddef;
  def unit C_per_millimol as
    unit C;
    unit mole {expo: -1, pref: milli};
  enddef;
  def unit picoA as
    unit ampere {pref: pico};
  enddef;
  def unit picoA_per_nanoA as
    unit ampere {pref: pico};
    unit ampere {expo: -1, pref: nano};
  enddef;
  def unit picoA_per_picoFarad as
    unit picoA;
    unit picoFarad {expo: -1};
  enddef;
  def unit microL as
    unit litre {pref: micro};
  enddef;
  def unit picoFarad as
    unit farad {pref: pico};
  enddef;
  def unit cm3_per_second as
    unit metre {expo: 3, pref: centi};
    unit second {expo: -1};
  enddef;
  def unit um3_per_second as
    unit metre {expo: 3, pref: micro};
    unit second {expo: -1};
  enddef;
  def unit m3mM as
    unit metre {expo: 3};
    unit mM;
  enddef;
  def unit ms2 as
    unit ms {expo: 2};
  enddef;
  def unit nM3_per_ps as
    unit metre {expo: 3, pref: nano};
    unit second {expo: -1, pref: pico};
  enddef;
  def unit per_s_squared_m_cubed as
    unit second {expo: -2};
    unit metre {expo: -3};
  enddef;
  def unit per_meters_cubed as
    unit metre {expo: -3};
  enddef;
  def unit umeter3 as
    unit metre {expo: 3, pref: micro};
  enddef;
  def unit mill1 as
    unit volt {expo: -1};
    unit volt {pref: milli};
  enddef;
  def unit picoV as
    unit volt {pref: pico};
  enddef;
  def unit pic0 as
    unit volt {expo: -1};
    unit picoV;
  enddef;
  def unit nanoV as
    unit volt {pref: nano};
  enddef;
  def unit nan0 as
    unit volt {expo: -1};
    unit nanoV;
  enddef;
  def unit kPa as
    unit pascal {pref: kilo};
  enddef;
  def unit L_per_s as
    unit metre {expo: 3, pref: deci};
    unit second {expo: -1};
  enddef;
  def unit L_per_s_per_kPa as
    unit metre {expo: 3, pref: deci};
    unit second {expo: -1};
    unit pascal {expo: -1, pref: kilo};
  enddef;
  def unit kPa_per_L as
    unit pascal {pref: kilo};
    unit metre {expo: -3, pref: deci};
  enddef;
  def unit L_per_kPa as
    unit metre {expo: 3, pref: deci};
    unit pascal {expo: -1, pref: kilo};
  enddef;
  def unit kPa_s_per_L as
    unit pascal {pref: kilo};
    unit second;
    unit metre {expo: -3, pref: deci};
  enddef;
  def unit mol_per_L as
    unit mole;
    unit litre {expo: -1};
  enddef;
  def unit L_per_mol as
    unit litre;
    unit mole {expo: -1};
  enddef;
  def unit minute as
    unit second {mult: 60};
  enddef;
  def unit umol as
    unit mole {pref: micro};
  enddef;
  def unit per_umol as
    unit umol {expo: -1};
  enddef;
  def unit umol_per_minute as
    unit umol;
    unit minute {expo: -1};
  enddef;
  def unit J_per_umol as
    unit joule;
    unit umol {expo: -1};
  enddef;
  def unit per_minute as
    unit minute {expo: -1};
  enddef;
  def unit per_minute_umol as
    unit minute {expo: -1};
    unit umol {expo: -1};
  enddef;
  def unit umolar as
    unit mole {pref: micro};
    unit litre {expo: -1};
  enddef;
  def unit per_umolar as
    unit umolar {expo: -1};
  enddef;
  def unit umolar_per_minute as
    unit umolar;
    unit minute {expo: -1};
  enddef;
  def unit J_per_umolar as
    unit joule;
    unit umolar {expo: -1};
  enddef;
  def unit per_minute_umolar as
    unit minute {expo: -1};
    unit umolar {expo: -1};
  enddef;
  def unit L_per_m3 as
    unit litre;
    unit metre {expo: -3};
  enddef;
  def unit pH as
    unit dimensionless;
  enddef;
  def unit Celsius as
    unit kelvin;
  enddef;
  def unit Celsius_1 as
    unit Celsius {expo: -1};
  enddef;
  def unit Celsius_2 as
    unit Celsius {expo: -2};
  enddef;

  def comp parameters as
    var V_rest_approx_soma_SN: milliV {init: -70, interface: public};
    var h_BK_min_soma_SN: dimensionless {init: 0.085, interface: public};
    var z_BK_coeff_soma_SN: mol_per_m3 {init: 0.001, interface: public};
    var V_mid_m_soma_SN: milliV {init: 20, interface: public};
    var V_mid_h_soma_SN: milliV {init: 40, interface: public};
    var V_den_m_soma_SN: milliV {init: 6, interface: public};
    var V_den_h_soma_SN: milliV {init: 4.0, interface: public};
    var V_mid_m_Na1_6_soma_SN: milliV {init: 36, interface: public};
    var V_mid_h_Na1_6_soma_SN: milliV {init: 53.2, interface: public};
    var V_den_m_Na1_6_soma_SN: milliV {init: 8.0, interface: public};
    var V_den_h_Na1_6_soma_SN: milliV {init: 8.0, interface: public};
    var V_mid_c_soma_SN: milliV {init: 8.1, interface: public};
    var V_den_c_soma_SN: milliV {init: 5, interface: public};
    var V_mid_m_Kv1_5_soma_SN: milliV {init: 6.0, interface: public};
    var V_den_m_Kv1_5_soma_SN: milliV {init: 6.4, interface: public};
    var V_mid_h_Kv1_5_soma_SN: milliV {init: 25.3, interface: public};
    var V_den_h_Kv1_5_soma_SN: milliV {init: 3.5, interface: public};
    var V_mid_m_Kv4_2_soma_SN: milliV {init: 18.8, interface: public};
    var V_den_m_Kv4_2_soma_SN: milliV {init: 16.6, interface: public};
    var V_mid_h_Kv4_2_soma_SN: milliV {init: 81.6, interface: public};
    var V_den_h_Kv4_2_soma_SN: milliV {init: 6.7, interface: public};
    var V_mid_m_Kv2_soma_SN: milliV {init: 6, interface: public};
    var V_den_m_Kv2_soma_SN: milliV {init: 8, interface: public};
    var V_mid_w_soma_SN: milliV {init: 35, interface: public};
    var Delta_V_mid_w_soma_SN: milliV {init: 0, interface: public};
    var V_den_w_soma_SN: milliV {init: 10, interface: public};
    var V_den_m_BK_soma_SN: milliV {init: 6.2, interface: public};
    var V_mid_h_BK_soma_SN: milliV {init: 26, interface: public};
    var V_den_h_BK_soma_SN: milliV {init: 5.8, interface: public};
    var k_thresh_m_soma_SN: milliV {init: 0, interface: public};
    var k_thresh_h_soma_SN: milliV {init: 0, interface: public};
    var tau_h_min_soma_SN: millis {init: 0.15, interface: public};
    var tau_h_max_soma_SN: millis {init: 5, interface: public};
    var tau_h_Na1_6_min_soma_SN: millis {init: 0.15, interface: public};
    var tau_h_Na1_6_max_soma_SN: millis {init: 300, interface: public};
    var tau_w_min_soma_SN: millis {init: 30, interface: public};
    var tau_c_min_soma_SN: millis {init: 0.2, interface: public};
    var tau_c_max_soma_SN: millis {init: 3.0, interface: public};
    var tau_hc_soma_SN: millis {init: 20.0, interface: public};
    var tau_h_Kv4_2_soma_SN: millis {init: 7.0, interface: public};
    var tau_z_BK_soma_SN: millis {init: 5, interface: public};
    var tau_m_SK_soma_SN: millis {init: 5, interface: public};
    var R_diffSensed_soma_SN: megaOhm {init: 10, interface: public};
    var C_sensed_soma_SN: picoF {init: 2, interface: public};
    var p_SK_soma_SN: dimensionless {init: 4, interface: public};
    var Cai_init_soma_SN: mol_per_m3 {init: 1e-4, interface: public};
    var Ca_mid_m_SK_soma_SN: mol_per_m3 {init: 3e-4, interface: public};
    var B_Ca_init_soma_SN: mol_per_m3 {init: 7.95, interface: public};
    var B_Ca_total_soma_SN: mol_per_m3 {init: 8, interface: public};
    var k_bind_Ca_soma_SN: per_mM_s {init: 0.1e6, interface: public};
    var k_unbind_Ca_soma_SN: Hz {init: 8e3, interface: public};
    var k_bind_Ca_ER_soma_SN: per_mM_s {init: 0.5e3, interface: public};
    var k_unbind_Ca_ER_soma_SN: Hz {init: 8e3, interface: public};
    var Nai_init_soma_SN: mol_per_m3 {init: 13, interface: public};
    var Ki_init_soma_SN: mol_per_m3 {init: 150, interface: public};
    var g_Na_soma_SN: microS {init: 2.3, interface: public};
    var g_Na_mod_soma_SN: dimensionless {init: 1.0, interface: public};
    var g_Na1_6_soma_SN: microS {init: 0.5, interface: public};
    var g_Na1_6_mod_soma_SN: dimensionless {init: 1.0, interface: public};
    var Cm_soma_SN: picoF {init: 30, interface: public};
    var p_Ca_soma_SN: m3_per_s {init: 4e-14, interface: public};
    var g_Kv1_5_soma_SN: microS {init: 8.8784938860e-02, interface: public};
    var g_Kv4_2_soma_SN: microS {init: 0.1, interface: public};
    var g_Kv2_soma_SN: microS {init: 0.0013333, interface: public};
    var g_KCa_BK_soma_SN: microS {init: 0.2, interface: public};
    var g_KCa_SK_soma_SN: microS {init: 5e-3, interface: public};
    var g_KCa_SK_mod_soma_SN: dimensionless {init: 1.0, interface: public};
    var Vol_soma_SN: m3 {init: 2000.0e-18, interface: public};
    var Cao_soma_SN: mol_per_m3 {init: 2, interface: public};
    var Ko_soma_SN: mol_per_m3 {init: 4.5, interface: public};
    var Nao_soma_SN: mol_per_m3 {init: 145, interface: public};
    var g_M_soma_SN: microS {init: 0.00389, interface: public};
    var g_M_mod_soma_SN: dimensionless {init: 1.0, interface: public};
    var g_leak_Na_soma_SN: microS {init: 0.0003, interface: public};
    var g_leak_K_soma_SN: microS {init: 0.0001, interface: public};
    var delta_gM_soma_SN: microS {init: 0.000, interface: public};
    var tau_w_num_soma_SN: millis {init: 1200, interface: public};
    var cAMP_soma_SN: dimensionless {init: 0.01, interface: public};
    var k_NaCa_soma_SN: nC_per_s {init: 300, interface: public};
    var alpha_NaCa_soma_SN: dimensionless {init: 1.2, interface: public};
    var gamma_NaCa_soma_SN: dimensionless {init: 0.35, interface: public};
    var Ksat_soma_SN: dimensionless {init: 0.1, interface: public};
    var KmCa_soma_SN: mol_per_m3 {init: 1.38, interface: public};
    var KmNai_soma_SN: mol_per_m3 {init: 87.5, interface: public};
    var k_NaK_soma_SN: nC_per_s {init: 0.4, interface: public};
    var Nai_mid_NaK_soma_SN: mol_per_m3 {init: 40, interface: public};
    var Nai_power_NaK_soma_SN: dimensionless {init: 1.5, interface: public};
    var Ko_mid_NaK_soma_SN: mol_per_m3 {init: 1, interface: public};
    var Ca_ER_init_soma_SN: mol_per_m3 {init: 0.6, interface: public};
    var K_mf_soma_SN: mol_per_m3 {init: 0.1e-3, interface: public};
    var K_mr_soma_SN: mol_per_m3 {init: 0.5, interface: public};
    var k_SERCA_soma_SN: mol_per_s {init: 3e-16, interface: public};
    var H_SERCA_soma_SN: dimensionless {init: 1.787, interface: public};
    var k_RyR_soma_SN: m3_per_s {init: 150e-15, interface: public};
    var tau_c_RyR_soma_SN: millis {init: 0.01, interface: public};
    var tau_hc_RyR_soma_SN: millis {init: 10, interface: public};
    var Cai_RyR_mid_soma_SN: mol_per_m3 {init: 8e-4, interface: public};
    var Cai_RyR_den_soma_SN: mol_per_m3 {init: 1e-4, interface: public};
    var Ca_ER_RyR_mid_soma_SN: mol_per_m3 {init: 0.5, interface: public};
    var Ca_ER_RyR_den_soma_SN: mol_per_m3 {init: 0.03, interface: public};
    var Ca_ER_RyR_tau_mid_soma_SN: mol_per_m3 {init: 0.3, interface: public};
    var Ca_ER_RyR_tau_den_soma_SN: mol_per_m3 {init: 0.01, interface: public};
    var c_ER_soma_SN: dimensionless {init: 0.01, interface: public};
    var c_SL_soma_SN: dimensionless {init: 0.02, interface: public};
    var k_IP3_soma_SN: m3_per_s {init: 0.00, interface: public};
    var k_leak_Ca_soma_SN: m3_per_s {init: 0.1e-16, interface: public};
    var h_IP3_init_soma_SN: dimensionless {init: 0.99, interface: public};
    var IP3_soma_SN: mol_per_m3 {init: 200e-6, interface: public};
    var a_2_soma_SN: m3_per_mol {init: 200, interface: public};
    var d_1_soma_SN: mol_per_m3 {init: 0.13e-3, interface: public};
    var d_2_soma_SN: mol_per_m3 {init: 1.049e-3, interface: public};
    var d_3_soma_SN: mol_per_m3 {init: 0.943e-3, interface: public};
    var d_5_soma_SN: mol_per_m3 {init: 0.08234e-3, interface: public};
    var D_Ca_soma_SN: m3_per_s {init: 6e-12, interface: public};
    var c_ER_pre_soma_SN: dimensionless {init: 0.049, interface: public};
    var D_Ca_ER_soma_SN: m3_per_s {init: 4.8e-15, interface: public};
    var I_in_soma_SN: nC_per_s {init: 0.00, interface: public};
    var channel_ratio_axon_SN: dimensionless {init: 0.5, interface: public};
    var C_axon_SN: picoF {init: 10.0, interface: public};
    var R_axon_SN: megaOhm {init: 300.0, interface: public};
    var V_rest_approx_axon_SN: milliV {init: -70, interface: public};
    var c_init_var_SN: dimensionless {init: 0.01, interface: public};
    var hc_init_var_SN: dimensionless {init: 0.9, interface: public};
    var V_mid_c_var_SN: milliV {init: 8.1, interface: public};
    var V_den_c_var_SN: milliV {init: 5, interface: public};
    var tau_c_min_var_SN: millis {init: 0.2, interface: public};
    var tau_c_max_var_SN: millis {init: 3.0, interface: public};
    var tau_hc_var_SN: millis {init: 20.0, interface: public};
    var Cai_init_var_SN: mol_per_m3 {init: 1e-4, interface: public};
    var B_Ca_init_var_SN: mol_per_m3 {init: 7.95, interface: public};
    var B_Ca_total_var_SN: mol_per_m3 {init: 8, interface: public};
    var k_bind_Ca_var_SN: per_mM_s {init: 0.1e6, interface: public};
    var k_unbind_Ca_var_SN: Hz {init: 8e3, interface: public};
    var k_bind_Ca_ER_var_SN: per_mM_s {init: 0.5e3, interface: public};
    var k_unbind_Ca_ER_var_SN: Hz {init: 8e3, interface: public};
    var Nai_var_SN: mol_per_m3 {init: 13, interface: public};
    var Nao_var_SN: mol_per_m3 {init: 145, interface: public};
    var NE_init_var_SN: mol_per_m3 {init: 0.0, interface: public};
    var Cai_NE_base_var_SN: mol_per_m3 {init: 1e-4, interface: public};
    var k_NE_var_SN: Hz {init: 200, interface: public};
    var k_NET_var_SN: Hz {init: 100, interface: public};
    var g_CaN_var_SN: microS {init: 1e-5, interface: public};
    var Vol_var_SN: m3 {init: 1.0e-18, interface: public};
    var Cao_var_SN: mol_per_m3 {init: 2, interface: public};
    var cAMP_var_SN: dimensionless {init: 0.01, interface: public};
    var k_NaCa_var_SN: nC_per_s {init: 0.15, interface: public};
    var alpha_NaCa_var_SN: dimensionless {init: 1.2, interface: public};
    var gamma_NaCa_var_SN: dimensionless {init: 0.35, interface: public};
    var Ksat_var_SN: dimensionless {init: 0.1, interface: public};
    var KmCa_var_SN: mol_per_m3 {init: 1.38, interface: public};
    var KmNai_var_SN: mol_per_m3 {init: 87.5, interface: public};
    var Ca_ER_init_var_SN: mol_per_m3 {init: 0.6, interface: public};
    var K_mf_var_SN: mol_per_m3 {init: 0.1e-3, interface: public};
    var K_mr_var_SN: mol_per_m3 {init: 0.5, interface: public};
    var k_SERCA_var_SN: mol_per_s {init: 1.5e-19, interface: public};
    var H_SERCA_var_SN: dimensionless {init: 1.787, interface: public};
    var tau_c_RyR_var_SN: millis {init: 0.01, interface: public};
    var tau_hc_RyR_var_SN: millis {init: 10, interface: public};
    var k_RyR_var_SN: m3_per_s {init: 75e-18, interface: public};
    var Cai_RyR_mid_var_SN: mol_per_m3 {init: 8e-4, interface: public};
    var Cai_RyR_den_var_SN: mol_per_m3 {init: 1e-4, interface: public};
    var Ca_ER_RyR_mid_var_SN: mol_per_m3 {init: 0.5, interface: public};
    var Ca_ER_RyR_den_var_SN: mol_per_m3 {init: 0.03, interface: public};
    var Ca_ER_RyR_tau_mid_var_SN: mol_per_m3 {init: 0.3, interface: public};
    var Ca_ER_RyR_tau_den_var_SN: mol_per_m3 {init: 0.01, interface: public};
    var k_IP3_var_SN: m3_per_s {init: 0.0, interface: public};
    var k_leak_Ca_var_SN: m3_per_s {init: 2e-20, interface: public};
    var h_IP3_init_var_SN: dimensionless {init: 0.99, interface: public};
    var IP3_var_SN: mol_per_m3 {init: 200e-6, interface: public};
    var a_2_var_SN: m3_per_mol {init: 200, interface: public};
    var d_1_var_SN: mol_per_m3 {init: 0.13e-3, interface: public};
    var d_2_var_SN: mol_per_m3 {init: 1.049e-3, interface: public};
    var d_3_var_SN: mol_per_m3 {init: 0.943e-3, interface: public};
    var d_5_var_SN: mol_per_m3 {init: 0.08234e-3, interface: public};
    var c_ER_var_SN: dimensionless {init: 0.01, interface: public};
    var c_SL_var_SN: dimensionless {init: 0.02, interface: public};
    var D_Ca_var_SN: m3_per_s {init: 3e-15, interface: public};
    var c_ER_pre_var_SN: dimensionless {init: 0.049, interface: public};
    var D_Ca_ER_var_SN: m3_per_s {init: 2.4e-18, interface: public};
  enddef;

  def comp parameters_global as
    var R: J_per_mol_K {init: 8.314, interface: public};
    var F: C_per_mol {init: 96485, interface: public};
    var T: kelvin {init: 310.15, interface: public};
    var N_avo: per_mol {init: 6.02e23, interface: public};
  enddef;

  def comp environment as
    var time: second {interface: public};
  enddef;

  def comp soma_SN_module as
    var t: second {interface: public};
    var R: J_per_mol_K {interface: public};
    var F: C_per_mol {interface: public};
    var T: kelvin {interface: public};
    var c_ER_pre: dimensionless {interface: public};
    var c_ER: dimensionless {interface: public};
    var c_SL: dimensionless {interface: public};
    var c_bulk: dimensionless {interface: public};
    var epsilon_tau: second {init: 1e-4};
    var Vol: m3 {interface: public};
    var I_in: nC_per_s {interface: public};
    var I_out: nC_per_s {interface: public};
    var E_K: milliV {interface: public};
    var E_Na: milliV {interface: public};
    var E_K_init: milliV {interface: public};
    var E_Na_init: milliV {interface: public};
    var Cm: picoF {interface: public};
    var V_rest_approx: milliV {interface: public};
    var V: milliV {init: V_rest_approx, interface: public};
    var V_sensed: milliV {init: V_rest_approx, interface: public};
    var C_sensed: picoF {interface: public};
    var I_in_delayed: nC_per_s {interface: public};
    var R_diffSensed: megaOhm {interface: public};
    var i_Na: nC_per_s {interface: public};
    var g_Na: microS {interface: public};
    var g_Na_mod: dimensionless {interface: public};
    var m_init: dimensionless {interface: public};
    var m: dimensionless {init: m_init, interface: public};
    var h_init: dimensionless {interface: public};
    var h: dimensionless {init: h_init, interface: public};
    var V_mid_m: milliV {interface: public};
    var V_den_m: milliV {interface: public};
    var V_mid_h: milliV {interface: public};
    var V_den_h: milliV {interface: public};
    var m_inf: dimensionless {interface: public};
    var h_inf: dimensionless {interface: public};
    var tau_m: millis {interface: public};
    var tau_h: millis {interface: public};
    var tau_h_min: millis {interface: public};
    var tau_h_max: millis {interface: public};
    var k_thresh_m: milliV {interface: public};
    var k_thresh_h: milliV {interface: public};
    var i_Na1_6: nC_per_s {interface: public};
    var g_Na1_6: microS {interface: public};
    var g_Na1_6_mod: dimensionless {interface: public};
    var m_Na1_6_init: dimensionless {interface: public};
    var m_Na1_6: dimensionless {init: m_init, interface: public};
    var h_Na1_6_init: dimensionless {interface: public};
    var h_Na1_6: dimensionless {init: h_init, interface: public};
    var V_mid_m_Na1_6: milliV {interface: public};
    var V_den_m_Na1_6: milliV {interface: public};
    var V_mid_h_Na1_6: milliV {interface: public};
    var V_den_h_Na1_6: milliV {interface: public};
    var m_Na1_6_inf: dimensionless {interface: public};
    var h_Na1_6_inf: dimensionless {interface: public};
    var tau_m_Na1_6: millis {interface: public};
    var tau_h_Na1_6: millis {interface: public};
    var tau_h_Na1_6_min: millis {interface: public};
    var tau_h_Na1_6_max: millis {interface: public};
    var i_Ca_L: nC_per_s {interface: public};
    var p_Ca: m3_per_s {interface: public};
    var c_init: dimensionless {interface: public};
    var c: dimensionless {init: c_init, interface: public};
    var hc_init: dimensionless {interface: public};
    var hc: dimensionless {init: hc_init, interface: public};
    var c_inf: dimensionless {interface: public};
    var hc_inf: dimensionless {interface: public};
    var tau_c: millis {interface: public};
    var tau_hc: millis {interface: public};
    var tau_c_min: millis {interface: public};
    var tau_c_max: millis {interface: public};
    var V_mid_c: milliV {interface: public};
    var V_den_c: milliV {interface: public};
    var V_mid_hc: milliV {interface: public};
    var V_den_hc: milliV {interface: public};
    var i_Kv2: nC_per_s {interface: public};
    var g_Kv2: microS {interface: public};
    var m_Kv2_init: dimensionless {interface: public};
    var m_Kv2: dimensionless {init: m_Kv2_init, interface: public};
    var m_Kv2_inf: dimensionless {interface: public};
    var tau_m_Kv2: millis {interface: public};
    var V_mid_m_Kv2: milliV {interface: public};
    var V_den_m_Kv2: milliV {interface: public};
    var i_Kv1_5: nC_per_s {interface: public};
    var g_Kv1_5: microS {interface: public};
    var m_Kv1_5_init: dimensionless {interface: public};
    var m_Kv1_5: dimensionless {init: m_Kv1_5_init, interface: public};
    var h_Kv1_5_init: dimensionless {interface: public};
    var h_Kv1_5: dimensionless {init: h_Kv1_5_init, interface: public};
    var m_Kv1_5_inf: dimensionless {interface: public};
    var h_Kv1_5_inf: dimensionless {interface: public};
    var tau_m_Kv1_5: millis {interface: public};
    var tau_h_Kv1_5: millis {interface: public};
    var V_mid_m_Kv1_5: milliV {interface: public};
    var V_den_m_Kv1_5: milliV {interface: public};
    var V_mid_h_Kv1_5: milliV {interface: public};
    var V_den_h_Kv1_5: milliV {interface: public};
    var i_Kv4_2: nC_per_s {interface: public};
    var g_Kv4_2: microS {interface: public};
    var m_Kv4_2_init: dimensionless {interface: public};
    var m_Kv4_2: dimensionless {init: m_Kv4_2_init, interface: public};
    var h_Kv4_2_init: dimensionless {interface: public};
    var h_Kv4_2: dimensionless {init: h_Kv4_2_init, interface: public};
    var m_Kv4_2_inf: dimensionless {interface: public};
    var h_Kv4_2_inf: dimensionless {interface: public};
    var tau_m_Kv4_2: millis {interface: public};
    var tau_h_Kv4_2: millis {interface: public};
    var V_mid_m_Kv4_2: milliV {interface: public};
    var V_den_m_Kv4_2: milliV {interface: public};
    var V_mid_h_Kv4_2: milliV {interface: public};
    var V_den_h_Kv4_2: milliV {interface: public};
    var g_KCa_BK: microS {interface: public};
    var i_KCa_BK: nC_per_s {interface: public};
    var m_BK: dimensionless {init: m_BK_init, interface: public};
    var m_BK_inf: dimensionless {interface: public};
    var m_BK_init: dimensionless {interface: public};
    var h_BK_min: dimensionless {interface: public};
    var h_BK: dimensionless {init: h_BK_init, interface: public};
    var h_BK_inf: dimensionless {interface: public};
    var h_BK_init: dimensionless {interface: public};
    var z_BK: dimensionless {init: z_BK_init, interface: public};
    var z_BK_inf: dimensionless {interface: public};
    var z_BK_init: dimensionless {interface: public};
    var z_BK_coeff: mol_per_m3 {interface: public};
    var V_mid_m_BK: milliV {interface: public};
    var V_den_m_BK: milliV {interface: public};
    var V_mid_h_BK: milliV {interface: public};
    var V_den_h_BK: milliV {interface: public};
    var tau_m_BK: millis {interface: public};
    var tau_h_BK: millis {interface: public};
    var tau_z_BK: millis {interface: public};
    var i_KCa_SK: nC_per_s {interface: public};
    var g_KCa_SK: microS {interface: public};
    var g_KCa_SK_mod: dimensionless {interface: public};
    var m_SK: dimensionless {init: m_SK_init, interface: public};
    var m_SK_inf: dimensionless {interface: public};
    var m_SK_init: dimensionless {interface: public};
    var tau_m_SK: millis {interface: public};
    var Ca_mid_m_SK: mol_per_m3 {interface: public};
    var p_SK: dimensionless {interface: public};
    var i_M: nC_per_s {interface: public};
    var g_M: microS {interface: public};
    var g_M_mod: dimensionless {interface: public};
    var w_init: dimensionless {interface: public};
    var w: dimensionless {init: w_init, interface: public};
    var w_inf: dimensionless {interface: public};
    var cAMP: dimensionless {interface: public};
    var tau_w: millis {interface: public};
    var delta_gM: microS {interface: public};
    var tau_w_num: millis {interface: public};
    var V_mid_w: milliV {interface: public};
    var Delta_V_mid_w: milliV {interface: public};
    var V_den_w: milliV {interface: public};
    var tau_w_min: millis {interface: public};
    var i_leak_Na: nC_per_s {interface: public};
    var i_leak_K: nC_per_s {interface: public};
    var g_leak_Na: microS {interface: public};
    var g_leak_K: microS {interface: public};
    var i_NaCa: nC_per_s {interface: public};
    var k_NaCa: nC_per_s {interface: public};
    var alpha_NaCa: dimensionless {interface: public};
    var gamma_NaCa: dimensionless {interface: public};
    var Ksat: dimensionless {interface: public};
    var KmCa: mol_per_m3 {interface: public};
    var KmNai: mol_per_m3 {interface: public};
    var i_NaK: nC_per_s {interface: public};
    var k_NaK: nC_per_s {interface: public};
    var Nai_mid_NaK: mol_per_m3 {interface: public};
    var Ko_mid_NaK: mol_per_m3 {interface: public};
    var Nai_power_NaK: dimensionless {interface: public};
    var j_IP3: mol_per_s {interface: public};
    var k_IP3: m3_per_s {interface: public};
    var k_leak_Ca: m3_per_s {interface: public};
    var m_IP3_inf: dimensionless {interface: public};
    var h_IP3_init: dimensionless {interface: public};
    var h_IP3: dimensionless {init: h_IP3_init, interface: public};
    var h_IP3_inf: dimensionless {interface: public};
    var tau_hIP3: millis {interface: public};
    var IP3: mol_per_m3 {interface: public};
    var a_2: m3_per_mol {interface: public};
    var d_1: mol_per_m3 {interface: public};
    var d_2: mol_per_m3 {interface: public};
    var d_3: mol_per_m3 {interface: public};
    var d_5: mol_per_m3 {interface: public};
    var Q_2: mol_per_m3 {interface: public};
    var j_leak_Ca: mol_per_s {interface: public};
    var K_mf: mol_per_m3 {interface: public};
    var K_mr: mol_per_m3 {interface: public};
    var k_SERCA: mol_per_s {interface: public};
    var H_SERCA: dimensionless {interface: public};
    var j_SERCA: mol_per_s {interface: public};
    var j_RyR: mol_per_s {interface: public};
    var k_RyR: m3_per_s {interface: public};
    var c_RyR_inf: dimensionless {interface: public};
    var hc_RyR_inf: dimensionless {interface: public};
    var c_RyR: dimensionless {init: 0.0, interface: public};
    var hc_RyR: dimensionless {init: 1.0, interface: public};
    var Cai_RyR_mid: mol_per_m3 {interface: public};
    var Cai_RyR_den: mol_per_m3 {interface: public};
    var Ca_ER_RyR_mid: mol_per_m3 {interface: public};
    var Ca_ER_RyR_den: mol_per_m3 {interface: public};
    var Ca_ER_RyR_tau_mid: mol_per_m3 {interface: public};
    var Ca_ER_RyR_tau_den: mol_per_m3 {interface: public};
    var tau_c_RyR: millis {interface: public};
    var tau_hc_RyR: millis {interface: public};
    var Cai_init: mol_per_m3 {interface: public};
    var Cai: mol_per_m3 {init: Cai_init, interface: public};
    var Ca_ER_init: mol_per_m3 {interface: public};
    var Ca_ER: mol_per_m3 {init: Ca_ER_init, interface: public};
    var Cao: mol_per_m3 {interface: public};
    var j_Ca_L: mol_per_s {interface: public};
    var j_NaCa_Ca: mol_per_s {interface: public};
    var Ca_bulk: mol_per_m3 {init: Cai_init, interface: public};
    var j_diffCa: mol_per_s {interface: public};
    var D_Ca: m3_per_s {interface: public};
    var j_diffCa_ER: mol_per_s {interface: public};
    var D_Ca_ER: m3_per_s {interface: public};
    var Ca_ER_pre: mol_per_m3 {init: Ca_ER_init, interface: public};
    var B_Cai: mol_per_m3 {init: B_Ca_init, interface: public};
    var B_Ca_init: mol_per_m3 {interface: public};
    var B_Ca_total: mol_per_m3 {interface: public};
    var CaB_Cai: mol_per_m3 {interface: public};
    var B_Ca_bulk: mol_per_m3 {init: B_Ca_init, interface: public};
    var CaB_Ca_bulk: mol_per_m3 {interface: public};
    var B_Ca_ER_pre: mol_per_m3 {init: B_Ca_init, interface: public};
    var CaB_Ca_ER_pre: mol_per_m3 {interface: public};
    var k_bind_Ca: per_mM_s {interface: public};
    var k_unbind_Ca: Hz {interface: public};
    var k_bind_Ca_ER: per_mM_s {interface: public};
    var k_unbind_Ca_ER: Hz {interface: public};
    var Nai_init: mol_per_m3 {interface: public};
    var Nai: mol_per_m3 {init: Nai_init, interface: public};
    var Nao: mol_per_m3 {interface: public};
    var j_Na: mol_per_s {interface: public};
    var j_Na1_6: mol_per_s {interface: public};
    var j_NaCa_Na: mol_per_s {interface: public};
    var j_NaK_Na: mol_per_s {interface: public};
    var j_leak_Na: mol_per_s {interface: public};
    var Ki_init: mol_per_m3 {interface: public};
    var Ki: mol_per_m3 {init: Ki_init, interface: public};
    var Ko: mol_per_m3 {interface: public};
    var j_Kv1_5: mol_per_s {interface: public};
    var j_Kv4_2: mol_per_s {interface: public};
    var j_Kv2: mol_per_s {interface: public};
    var j_KCa_BK: mol_per_s {interface: public};
    var j_KCa_SK: mol_per_s {interface: public};
    var j_KM: mol_per_s {interface: public};
    var j_NaK_K: mol_per_s {interface: public};
    var j_leak_K: mol_per_s {interface: public};
    c_bulk = 1{dimensionless}-c_SL-c_ER-c_ER_pre;
    E_K = R*T/F*ln(Ko/Ki)*1000{millis_per_s};
    E_Na = R*T/F*ln(Nao/Nai)*1000{millis_per_s};
    E_K_init = R*T/F*ln(Ko/Ki_init)*1000{millis_per_s};
    E_Na_init = R*T/F*ln(Nao/Nai_init)*1000{millis_per_s};
    ode(V, t) = -1e6{milliV_per_kiloV}*(i_Na+i_Na1_6+i_Ca_L+i_Kv2+i_Kv1_5+i_Kv4_2+i_KCa_BK+i_KCa_SK+i_M+i_NaCa+i_NaK+i_leak_Na+i_leak_K+I_in_delayed+I_out)/Cm;
    ode(V_sensed, t) = -1e6{milliV_per_kiloV}*(I_in-I_in_delayed)/C_sensed;
    I_in_delayed = -(V_sensed-V)/R_diffSensed;
    m_init = 1{dimensionless}/(1{dimensionless}+exp(-(V_rest_approx+V_mid_m)/V_den_m));
    h_init = 1{dimensionless}/(1{dimensionless}+exp((V_rest_approx+V_mid_h)/V_den_h));
    // j_init = 1{dimensionless}/(1{dimensionless}+exp((V_rest_approx+V_mid_j)/V_den_j));
    m_inf = 1{dimensionless}/(1{dimensionless}+exp(-(V+V_mid_m)/V_den_m));
    h_inf = 1{dimensionless}/(1{dimensionless}+exp((V+V_mid_h)/V_den_h));
    // j_inf  = 1{dimensionless}/(1{dimensionless}+exp((V+V_mid_j)/V_den_j));
    // I changed tau_m so it is dependent on V_mid_h.
    // I have made sure it has the same maximum tau_m as in Beluzzi1991 easier to fit.
    // TODO Need to compare this to experimental data.
    // tau_m = 0.06{millis} + 1{dimensionless}/(42.98{per_millis}*exp(0.08915{per_milliV}*V)+0.9230{per_millis}*exp(-0.03351{per_milliV}*V));
    tau_m = 0.06{millis}+0.8{millis}/(exp((V_mid_m+10{milliV}+V)/10{milliV})+exp(-(V_mid_m+10{milliV}+V)/20{milliV}));
    // This tau_h equation has been modified. Make sure it is consistant with experimental data
    // I changed it to increase restitution period of the Na Channel, stays closed for longer after firing, and to simplify it.
    // tau_h     = tau_h_min+(tau_h_max-tau_h_min)/(1{dimensionless}+exp(-(V_mid_h+10{milliV}+V)/14{milliV})+exp((V_mid_h-20{milliV}+V)/1.556{milliV}));
    tau_h = tau_h_min+(tau_h_max-tau_h_min)/(1{dimensionless}+exp(-(V_mid_h+10{milliV}+V)/14{milliV})+exp((V_mid_h-20{milliV}+V)/2{milliV}));
    // tau_j     = tau_j_min+(tau_j_max-tau_j_min)/(1{dimensionless}+exp(-(V_mid_j+10{milliV}+V)/14{milliV})+exp((V_mid_j-20{milliV}+V)/2{milliV}));
    ode(m, t) = (m_inf-m)/(abs(tau_m/1000{millis_per_s})+epsilon_tau);
    ode(h, t) = (h_inf-h)/(abs(tau_h/1000{millis_per_s})+epsilon_tau);
    // ode(j, t) = (j_inf-j)/(abs(tau_j/1000{millis_per_s})+epsilon_tau);
    i_Na = g_Na*g_Na_mod*(V-E_Na)*pow(m, 3{dimensionless})*h;
    m_Na1_6_init = 1{dimensionless}/(1{dimensionless}+exp(-(V_rest_approx+V_mid_m_Na1_6)/V_den_m_Na1_6));
    h_Na1_6_init = 1{dimensionless}/(1{dimensionless}+exp((V_rest_approx+V_mid_h_Na1_6)/V_den_h_Na1_6));
    // j_init = 1{dimensionless}/(1{dimensionless}+exp((V_rest_approx+V_mid_j)/V_den_j));
    m_Na1_6_inf = 1{dimensionless}/(1{dimensionless}+exp(-(V+V_mid_m_Na1_6)/V_den_m_Na1_6));
    h_Na1_6_inf = 1{dimensionless}/(1{dimensionless}+exp((V+V_mid_h_Na1_6)/V_den_h_Na1_6));
    tau_m_Na1_6 = 0.06{millis}+0.8{millis}/(exp((V_mid_m_Na1_6+10{milliV}+V)/10{milliV})+exp(-(V_mid_m_Na1_6+10{milliV}+V)/20{milliV}));
    tau_h_Na1_6 = tau_h_Na1_6_min+(tau_h_Na1_6_max-tau_h_Na1_6_min)/(1{dimensionless}+exp(-(V_mid_h_Na1_6+10{milliV}+V)/14{milliV})+exp((V_mid_h_Na1_6-20{milliV}+V)/2{milliV}));
    ode(m_Na1_6, t) = (m_Na1_6_inf-m_Na1_6)/(abs(tau_m_Na1_6/1000{millis_per_s})+epsilon_tau);
    ode(h_Na1_6, t) = (h_Na1_6_inf-h_Na1_6)/(abs(tau_h_Na1_6/1000{millis_per_s})+epsilon_tau);
    // ode(j, t) = (j_inf-j)/(abs(tau_j/1000{millis_per_s})+epsilon_tau);
    i_Na1_6 = g_Na1_6*g_Na1_6_mod*(V-E_Na)*pow(m_Na1_6, 3{dimensionless})*h_Na1_6;
    V_mid_hc = V_mid_c+11{milliV};
    V_den_hc = V_den_c;
    c_init = 1{dimensionless}/(1{dimensionless}+exp(-(V_rest_approx+V_mid_c)/V_den_c));
    hc_init = 1{dimensionless}/(1{dimensionless}+exp((V_rest_approx+V_mid_hc)/V_den_hc));
    c_inf = 1{dimensionless}/(1{dimensionless}+exp(-(V+V_mid_c)/V_den_c));
    hc_inf = 1{dimensionless}/(1{dimensionless}+exp((V+V_mid_hc)/V_den_hc));
    // This has changed a lot from the Belluzi paper. Double check with Harvey's data.
    tau_c = tau_c_min+(tau_c_max-tau_c_min)/(1{dimensionless}+exp((V_mid_c-20{milliV}+V)/V_den_c));
    // +1{dimensionless}/(0.343{per_millis}*exp(0.0925{per_milliV}*V)+1.88{per_millis}*exp(-0.00732{per_milliV}*V));
    ode(c, t) = (c_inf-c)/(abs(tau_c/1000{millis_per_s})+epsilon_tau);
    ode(hc, t) = (hc_inf-hc)/(abs(tau_hc/1000{millis_per_s})+epsilon_tau);
    // TODO I have included a very rough cAMP inclusion here, improve this
    i_Ca_L = 1e6{milliV_per_kiloV}*sqr(F)*V*p_Ca*(1{dimensionless}+cAMP)/(R*T)*(Cai*exp(2e-3{s_per_millis}*V*F/(R*T))-Cao)/(exp(2e-3{s_per_millis}*V*F/(R*T))-1{dimensionless})*sqr(c)*hc;
    m_Kv2_init = 1{dimensionless}/(1{dimensionless}+exp(-(V_rest_approx+V_mid_m_Kv2)/V_den_m_Kv2));
    m_Kv2_inf = 1{dimensionless}/(1{dimensionless}+exp(-(V+V_mid_m_Kv2)/V_den_m_Kv2));
    tau_m_Kv2 = 2.31{millis}+45{millis}/(exp((V_mid_m_Kv2+V+10{milliV})/4{milliV})+exp(-(V_mid_m_Kv2+V+10{milliV})/4{milliV}));
    ode(m_Kv2, t) = (m_Kv2_inf-m_Kv2)/(abs(tau_m_Kv2/1000{millis_per_s})+epsilon_tau);
    i_Kv2 = g_Kv2*(V-E_K)*m_Kv2;
    m_Kv1_5_init = 1{dimensionless}/(1{dimensionless}+exp(-(V_rest_approx+V_mid_m_Kv1_5)/V_den_m_Kv1_5));
    h_Kv1_5_init = 1{dimensionless}/(1{dimensionless}+exp((V_rest_approx+V_mid_h_Kv1_5)/V_den_h_Kv1_5));
    m_Kv1_5_inf = 1{dimensionless}/(1{dimensionless}+exp(-(V+V_mid_m_Kv1_5)/V_den_m_Kv1_5));
    h_Kv1_5_inf = 1{dimensionless}/(1{dimensionless}+exp((V+V_mid_h_Kv1_5)/V_den_h_Kv1_5));
    tau_m_Kv1_5 = sel
      case V < 50{milliV}:
        -0.1165{millis_per_milliV}*V+8.33{millis};
      otherwise:
        2{millis};
    endsel;
    tau_h_Kv1_5 = sel
      case V < 100{milliV}:
        -15.5{millis_per_milliV}*V+1620{millis};
      otherwise:
        50{millis};
    endsel;
    ode(m_Kv1_5, t) = (m_Kv1_5_inf-m_Kv1_5)/(abs(tau_m_Kv1_5/1000{millis_per_s})+epsilon_tau);
    ode(h_Kv1_5, t) = (h_Kv1_5_inf-h_Kv1_5)/(abs(tau_h_Kv1_5/1000{millis_per_s})+epsilon_tau);
    i_Kv1_5 = g_Kv1_5*m_Kv1_5*h_Kv1_5*(V-E_K);
    m_Kv4_2_init = 1{dimensionless}/(1{dimensionless}+exp(-(V_rest_approx+V_mid_m_Kv4_2)/V_den_m_Kv4_2));
    h_Kv4_2_init = 1{dimensionless}/(1{dimensionless}+exp((V_rest_approx+V_mid_h_Kv4_2)/V_den_h_Kv4_2));
    m_Kv4_2_inf = 1{dimensionless}/(1{dimensionless}+exp(-(V+V_mid_m_Kv4_2)/V_den_m_Kv4_2));
    h_Kv4_2_inf = 1{dimensionless}/(1{dimensionless}+exp((V+V_mid_h_Kv4_2)/V_den_h_Kv4_2));
    // WAS
    // 1.0{millis}/(0.026{dimensionless}*exp(-0.026{per_milliV}*V)+35{dimensionless}*exp(0.136{per_milliV}*V));
    tau_m_Kv4_2 = sel
      case V < 50{milliV}:
        1.0{millis}/(0.026{dimensionless}*exp(-0.026{per_milliV}*V)+35{dimensionless}*exp(0.136{per_milliV}*V));
      otherwise:
        1.7{millis}/(1{dimensionless}+exp((-42{milliV}-V)/(-26{milliV})))+0.34{millis};
    endsel;
    // WAS
    // tau_h_Kv4_2     = 0.01{millis_per_milliV}*V+6.7{millis};
    ode(m_Kv4_2, t) = (m_Kv4_2_inf-m_Kv4_2)/(abs(tau_m_Kv4_2/1000{millis_per_s})+epsilon_tau);
    ode(h_Kv4_2, t) = (h_Kv4_2_inf-h_Kv4_2)/(abs(tau_h_Kv4_2/1000{millis_per_s})+epsilon_tau);
    i_Kv4_2 = g_Kv4_2*pow(m_Kv4_2, 3{dimensionless})*h_Kv4_2*(V-E_K);
    V_mid_m_BK = V_mid_h_BK-3.1{milliV};
    m_BK_init = 1{dimensionless}/(1{dimensionless}+exp(-(V_rest_approx+V_mid_m_BK)/V_den_m_BK));
    h_BK_init = h_BK_min+(1{dimensionless}-h_BK_min)/(1{dimensionless}+exp((V_rest_approx+V_mid_h_BK)/V_den_h_BK));
    z_BK_init = 1{dimensionless}/(1{dimensionless}+z_BK_coeff/Cai_init);
    m_BK_inf = 1{dimensionless}/(1{dimensionless}+exp(-(V+V_mid_m_BK)/V_den_m_BK));
    h_BK_inf = h_BK_min+(1{dimensionless}-h_BK_min)/(1{dimensionless}+exp((V+V_mid_h_BK)/V_den_h_BK));
    z_BK_inf = 1{dimensionless}/(1{dimensionless}+z_BK_coeff/Cai);
    // For z calculation, this is designed for Cai being simulated in a 100nm shell
    // underneath the membrane.
    // below tau_m min increase from 0.505 to 1.505 to allow for g_Na to not be instantly blocked.
    tau_m_BK = 1.505{millis}+1000{millis}/(exp((V+V_mid_m_BK+80.2{milliV})/10.1{milliV})+exp(-(V+V_mid_m_BK-39.5{milliV})/10{milliV}));
    tau_h_BK = 1.9{millis}+1000{millis}/(exp((V+V_mid_h_BK+16.5{milliV})/5.2{milliV})+exp(-(V+V_mid_h_BK-90.2{milliV})/12.9{milliV}));
    ode(m_BK, t) = (m_BK_inf-m_BK)/(abs(tau_m_BK/1000{millis_per_s})+epsilon_tau);
    ode(h_BK, t) = (h_BK_inf-h_BK)/(abs(tau_h_BK/1000{millis_per_s})+epsilon_tau);
    ode(z_BK, t) = (z_BK_inf-z_BK)/(abs(tau_z_BK/1000{millis_per_s})+epsilon_tau);
    i_KCa_BK = g_KCa_BK*pow(m_BK, 3{dimensionless})*h_BK*z_BK*(V-E_K);
    m_SK_init = pow(Cai_init, p_SK)/(pow(Ca_mid_m_SK, p_SK)+pow(Cai_init, p_SK));
    m_SK_inf = pow(Ca_bulk, p_SK)/(pow(Ca_mid_m_SK, p_SK)+pow(Ca_bulk, p_SK));
    ode(m_SK, t) = (m_SK_inf-m_SK)/(tau_m_SK/1000{millis_per_s});
    i_KCa_SK = g_KCa_SK*g_KCa_SK_mod*m_SK*(V-E_K);
    w_init = 1{dimensionless}/(1{dimensionless}+exp(-(V_rest_approx+V_mid_w+Delta_V_mid_w)/V_den_w));
    w_inf = 1{dimensionless}/(1{dimensionless}+exp(-(V+V_mid_w+Delta_V_mid_w)/V_den_w));
    // tau_w = 400{millis}/(3.3{dimensionless}*exp((V+35{milliV})/10{milliV})+exp(-(V+35{milliV})/20{milliV}));
    // tau_w = tau_w_num/(3.3{dimensionless}*exp((V+V_mid_w)/20{milliV})+exp(-(V+V_mid_w)/30{milliV}));
    // below I slow down the increase.
    tau_w = tau_w_min+tau_w_num/(2.0{dimensionless}*exp((V+V_mid_w+Delta_V_mid_w)/15{milliV})+exp(-(V+V_mid_w+Delta_V_mid_w)/25{milliV}));
    // TODO I need to make sure tau doesn't go to zero so quickly when positive voltage, probably
    // by changing the 10 denominator to 20 or something similar. I HAVE CHANGED THIS, AND IT WORKS.
    // THIS HELPS CALIBRATE THE M-TYPE potassium channel!!
    // general i_M for Golomb and Martin
    ode(w, t) = (w_inf-w)/(tau_w/1000{millis_per_s});
    // This equation isn't correct for cAMP, m-type should still go to zero at small voltages
    i_M = g_M_mod*g_M*w*(V-E_K);
    i_leak_Na = g_leak_Na*(V-E_Na);
    i_leak_K = g_leak_K*(V-E_K);
    i_NaCa = k_NaCa*(exp(gamma_NaCa*V*1e-3{s_per_millis}*F/(R*T))*pow(Nai, 3{dimensionless})*Cao-exp((gamma_NaCa-1{dimensionless})*V*1e-3{s_per_millis}*F/(R*T))*pow(Nao, 3{dimensionless})*Cai*alpha_NaCa)/((pow(KmNai, 3{dimensionless})+pow(Nao, 3{dimensionless}))*(KmCa+Cao)*(1{dimensionless}+Ksat*exp((gamma_NaCa-1{dimensionless})*V*1e-3{s_per_millis}*F/(R*T))));
    i_NaK = k_NaK*(V+150{milliV})/(V+200{milliV})*pow(Nai, Nai_power_NaK)/(pow(Nai, Nai_power_NaK)+pow(Nai_mid_NaK, Nai_power_NaK))*Ko/(Ko+Ko_mid_NaK);
    m_IP3_inf = IP3/(IP3+d_1)*Cai/(Cai+d_5);
    Q_2 = d_2*(IP3+d_1)/(IP3+d_3);
    tau_hIP3 = 1{millis}/(a_2*(Q_2+Cai));
    h_IP3_inf = Q_2/(Q_2+Cai);
    ode(h_IP3, t) = (h_IP3_inf-h_IP3)/(tau_hIP3/1000{millis_per_s});
    j_IP3 = -k_IP3*pow(m_IP3_inf, 3{dimensionless})*pow(h_IP3, 3{dimensionless})*(Cai-Ca_ER);
    j_leak_Ca = -k_leak_Ca*(Ca_bulk-Ca_ER_pre);
    j_SERCA = -k_SERCA*(pow(Ca_bulk/K_mf, H_SERCA)-pow(Ca_ER_pre/K_mr, H_SERCA))/(1{dimensionless}+pow(Ca_bulk/K_mf, H_SERCA)+pow(Ca_ER_pre/K_mr, H_SERCA));
    c_RyR_inf = 1{dimensionless}/(1{dimensionless}+exp(-(Cai-Cai_RyR_mid)/Cai_RyR_den));
    // deactivated by Ca_ER decreasing, so also activated by Ca_ER
    hc_RyR_inf = 1{dimensionless}/(1{dimensionless}+exp(-(Ca_ER-Ca_ER_RyR_mid)/Ca_ER_RyR_den));
    ode(c_RyR, t) = (c_RyR_inf-c_RyR)/(tau_c_RyR/1000{millis_per_s});
    // tau_hc_RyR = tau_hc_RyR_min; // + 200{millis}/(exp((Ca_ER-Ca_ER_RyR_tau_mid)/Ca_ER_RyR_tau_den)+exp(-(Ca_ER-Ca_ER_RyR_tau_mid)/Ca_ER_RyR_tau_den));
    ode(hc_RyR, t) = (hc_RyR_inf-hc_RyR)/(tau_hc_RyR/1000{millis_per_s});
    // TODO include cAMP dependence
    // TODO should it be c_RyR^3, to be more similar to
    j_RyR = k_RyR*(Ca_ER-Cai)*pow(c_RyR, 3{dimensionless})*pow(hc_RyR, 3{dimensionless});
    ode(B_Cai, t) = k_unbind_Ca*CaB_Cai-k_bind_Ca*Cai*B_Cai;
    CaB_Cai = B_Ca_total-B_Cai;
    ode(B_Ca_bulk, t) = k_unbind_Ca*CaB_Ca_bulk-k_bind_Ca*Ca_bulk*B_Ca_bulk;
    CaB_Ca_bulk = B_Ca_total-B_Ca_bulk;
    ode(B_Ca_ER_pre, t) = k_unbind_Ca_ER*CaB_Ca_ER_pre-k_bind_Ca_ER*Ca_ER_pre*B_Ca_ER_pre;
    CaB_Ca_ER_pre = B_Ca_total-B_Ca_ER_pre;
    j_Ca_L = -i_Ca_L/(2{dimensionless}*F)*1e-9{A_per_nanoA};
    j_NaCa_Ca = i_NaCa/F*1e-9{A_per_nanoA};
    j_diffCa = -D_Ca*(Cai-Ca_bulk);
    j_diffCa_ER = D_Ca_ER*(Ca_ER_pre-Ca_ER);
    ode(Cai, t) = 1{dimensionless}/(Vol*c_SL)*(j_Ca_L+j_NaCa_Ca+j_IP3+j_RyR+j_diffCa)+k_unbind_Ca*CaB_Cai-k_bind_Ca*Cai*B_Cai;
    ode(Ca_bulk, t) = 1{dimensionless}/(Vol*c_bulk)*(j_SERCA-j_diffCa+j_leak_Ca)+k_unbind_Ca*CaB_Ca_bulk-k_bind_Ca*Ca_bulk*B_Ca_bulk;
    ode(Ca_ER_pre, t) = 1{dimensionless}/(Vol*c_ER_pre)*(-j_SERCA-j_leak_Ca-j_diffCa_ER)+k_unbind_Ca_ER*CaB_Ca_ER_pre-k_bind_Ca_ER*Ca_ER_pre*B_Ca_ER_pre;
    ode(Ca_ER, t) = 1{dimensionless}/(Vol*c_ER)*(-j_IP3-j_RyR+j_diffCa_ER);
    j_NaCa_Na = -3{dimensionless}*i_NaCa/F*1e-9{A_per_nanoA};
    j_NaK_Na = -3{dimensionless}*i_NaK/F*1e-9{A_per_nanoA};
    j_Na = -i_Na/F*1e-9{A_per_nanoA};
    j_Na1_6 = -i_Na1_6/F*1e-9{A_per_nanoA};
    // j_HCN_Na = max(-iHCN/F*1e-9{A_per_nanoA}, 0{mol_per_s});
    j_leak_Na = -i_leak_Na/F*1e-9{A_per_nanoA};
    ode(Nai, t) = (j_Na+j_Na1_6+j_NaCa_Na+j_NaK_Na+j_leak_Na)/Vol;
    j_Kv1_5 = -i_Kv1_5/F*1e-9{A_per_nanoA};
    j_Kv4_2 = -i_Kv4_2/F*1e-9{A_per_nanoA};
    j_Kv2 = -i_Kv2/F*1e-9{A_per_nanoA};
    j_KCa_BK = -i_KCa_BK/F*1e-9{A_per_nanoA};
    j_KCa_SK = -i_KCa_SK/F*1e-9{A_per_nanoA};
    j_KM = -i_M/F*1e-9{A_per_nanoA};
    j_NaK_K = 2{dimensionless}*i_NaK/F*1e-9{A_per_nanoA};
    // j_HCN_k = -max(iHCN/F*1e-9{A_per_nanoA}, 0{mol_per_s});
    j_leak_K = -i_leak_K/F*1e-9{A_per_nanoA};
    ode(Ki, t) = (j_Kv1_5+j_Kv4_2+j_Kv2+j_KCa_BK+j_KCa_SK+j_KM+j_NaK_K+j_leak_K)/Vol;
  enddef;

  def comp axon_SN_module as
    var t: second {interface: public};
    var C: picoF {interface: public};
    var R: megaOhm {interface: public};
    var V_in: milliV {interface: public};
    var I: nC_per_s {interface: public};
    var V_rest_approx: milliV {interface: public};
    var V: milliV {init: V_rest_approx, interface: public};
    var channel_ratio: dimensionless {interface: public};
    var I_channels: nC_per_s {interface: public};
    I = (V_in-V)/R;
    I_channels = I*channel_ratio;
    ode(V, t) = 1e6{milliV_per_kiloV}*(I+I_channels)/C;
  enddef;

  def comp var_SN_module as
    var t: second {interface: public};
    var R: J_per_mol_K {interface: public};
    var F: C_per_mol {interface: public};
    var T: kelvin {interface: public};
    var N_avo: per_mol {interface: public};
    var epsilon_tau: second {init: 1e-4};
    var Vol: m3 {interface: public};
    var c_ER_pre: dimensionless {interface: public};
    var c_ER: dimensionless {interface: public};
    var c_SL: dimensionless {interface: public};
    var c_bulk: dimensionless {interface: public};
    var V: milliV {interface: public};
    var E_Ca: milliV {interface: public};
    var cAMP: dimensionless {interface: public};
    var i_Ca_N: nC_per_s {interface: public};
    var g_CaN: microS {interface: public};
    var c_init: dimensionless {interface: public};
    var c: dimensionless {init: c_init, interface: public};
    var hc_init: dimensionless {interface: public};
    var hc: dimensionless {init: hc_init, interface: public};
    var c_inf: dimensionless {interface: public};
    var hc_inf: dimensionless {interface: public};
    var tau_c: millis {interface: public};
    var tau_hc: millis {interface: public};
    var tau_c_min: millis {interface: public};
    var tau_c_max: millis {interface: public};
    var V_mid_c: milliV {interface: public};
    var V_den_c: milliV {interface: public};
    var V_mid_hc: milliV {interface: public};
    var V_den_hc: milliV {interface: public};
    var Nai: mol_per_m3 {interface: public};
    var Nao: mol_per_m3 {interface: public};
    var i_NaCa: nC_per_s {interface: public};
    var k_NaCa: nC_per_s {interface: public};
    var alpha_NaCa: dimensionless {interface: public};
    var gamma_NaCa: dimensionless {interface: public};
    var Ksat: dimensionless {interface: public};
    var KmCa: mol_per_m3 {interface: public};
    var KmNai: mol_per_m3 {interface: public};
    var j_IP3: mol_per_s {interface: public};
    var k_IP3: m3_per_s {interface: public};
    var k_leak_Ca: m3_per_s {interface: public};
    var m_IP3_inf: dimensionless {interface: public};
    var h_IP3_init: dimensionless {interface: public};
    var h_IP3: dimensionless {init: h_IP3_init, interface: public};
    var h_IP3_inf: dimensionless {interface: public};
    var tau_hIP3: millis {interface: public};
    var IP3: mol_per_m3 {interface: public};
    var a_2: m3_per_mol {interface: public};
    var d_1: mol_per_m3 {interface: public};
    var d_2: mol_per_m3 {interface: public};
    var d_3: mol_per_m3 {interface: public};
    var d_5: mol_per_m3 {interface: public};
    var Q_2: mol_per_m3 {interface: public};
    var j_leak_Ca: mol_per_s {interface: public};
    var K_mf: mol_per_m3 {interface: public};
    var K_mr: mol_per_m3 {interface: public};
    var k_SERCA: mol_per_s {interface: public};
    var H_SERCA: dimensionless {interface: public};
    var j_SERCA: mol_per_s {interface: public};
    var j_RyR: mol_per_s {interface: public};
    var k_RyR: m3_per_s {interface: public};
    var c_RyR_inf: dimensionless {interface: public};
    var hc_RyR_inf: dimensionless {interface: public};
    var c_RyR: dimensionless {init: 0.0, interface: public};
    var hc_RyR: dimensionless {init: 1.0, interface: public};
    var Cai_RyR_mid: mol_per_m3 {interface: public};
    var Cai_RyR_den: mol_per_m3 {interface: public};
    var Ca_ER_RyR_mid: mol_per_m3 {interface: public};
    var Ca_ER_RyR_den: mol_per_m3 {interface: public};
    var Ca_ER_RyR_tau_mid: mol_per_m3 {interface: public};
    var Ca_ER_RyR_tau_den: mol_per_m3 {interface: public};
    var tau_c_RyR: millis {interface: public};
    var tau_hc_RyR: millis {interface: public};
    var Cai_init: mol_per_m3 {interface: public};
    var Cai: mol_per_m3 {init: Cai_init, interface: public};
    var Ca_ER_init: mol_per_m3 {interface: public};
    var Ca_ER: mol_per_m3 {init: Ca_ER_init, interface: public};
    var Cao: mol_per_m3 {interface: public};
    var j_Ca_N: mol_per_s {interface: public};
    var j_NaCa_Ca: mol_per_s {interface: public};
    var Ca_bulk: mol_per_m3 {init: Cai_init, interface: public};
    var j_diffCa: mol_per_s {interface: public};
    var D_Ca: m3_per_s {interface: public};
    var j_diffCa_ER: mol_per_s {interface: public};
    var D_Ca_ER: m3_per_s {interface: public};
    var Ca_ER_pre: mol_per_m3 {init: Ca_ER_init, interface: public};
    var B_Cai: mol_per_m3 {init: B_Ca_init, interface: public};
    var B_Ca_init: mol_per_m3 {interface: public};
    var B_Ca_total: mol_per_m3 {interface: public};
    var CaB_Cai: mol_per_m3 {interface: public};
    var B_Ca_bulk: mol_per_m3 {init: B_Ca_init, interface: public};
    var CaB_Ca_bulk: mol_per_m3 {interface: public};
    var B_Ca_ER_pre: mol_per_m3 {init: B_Ca_init, interface: public};
    var CaB_Ca_ER_pre: mol_per_m3 {interface: public};
    var k_bind_Ca: per_mM_s {interface: public};
    var k_unbind_Ca: Hz {interface: public};
    var k_bind_Ca_ER: per_mM_s {interface: public};
    var k_unbind_Ca_ER: Hz {interface: public};
    var NE_init: mol_per_m3 {interface: public};
    var NE: mol_per_m3 {init: NE_init, interface: public};
    var Cai_NE_base: mol_per_m3 {interface: public};
    var k_NE: Hz {interface: public};
    var k_NET: Hz {interface: public};
    c_bulk = 1{dimensionless}-c_SL-c_ER-c_ER_pre;
    E_Ca = R*T/(2{dimensionless}*F)*ln(Cao/Cai)*1000{millis_per_s};
    V_mid_hc = V_mid_c+11{milliV};
    V_den_hc = V_den_c;
    c_inf = 1{dimensionless}/(1{dimensionless}+exp(-(V+V_mid_c)/V_den_c));
    hc_inf = 1{dimensionless}/(1{dimensionless}+exp((V+V_mid_hc)/V_den_hc));
    tau_c = tau_c_min+(tau_c_max-tau_c_min)/(1{dimensionless}+exp((V_mid_c-20{milliV}+V)/V_den_c));
    // +1{dimensionless}/(0.343{per_millis}*exp(0.0925{per_milliV}*V)+1.88{per_millis}*exp(-0.00732{per_milliV}*V));
    // +1{dimensionless}/(0.242{per_millis}*exp(0.145{per_milliV}*V)+0.0434{per_millis}*exp(-0.0201{per_milliV}*V));
    ode(c, t) = (c_inf-c)/(abs(tau_c/1000{millis_per_s})+epsilon_tau);
    ode(hc, t) = (hc_inf-hc)/(abs(tau_hc/1000{millis_per_s})+epsilon_tau);
    // TODO Include cAMP effects?
    i_Ca_N = g_CaN*(V-E_Ca)*sqr(c)*hc;
    i_NaCa = k_NaCa*(exp(gamma_NaCa*V*1e-3{s_per_millis}*F/(R*T))*pow(Nai, 3{dimensionless})*Cao-exp((gamma_NaCa-1{dimensionless})*V*1e-3{s_per_millis}*F/(R*T))*pow(Nao, 3{dimensionless})*Cai*alpha_NaCa)/((pow(KmNai, 3{dimensionless})+pow(Nao, 3{dimensionless}))*(KmCa+Cao)*(1{dimensionless}+Ksat*exp((gamma_NaCa-1{dimensionless})*V*1e-3{s_per_millis}*F/(R*T))));
    m_IP3_inf = IP3/(IP3+d_1)*Cai/(Cai+d_5);
    Q_2 = d_2*(IP3+d_1)/(IP3+d_3);
    tau_hIP3 = 1{millis}/(a_2*(Q_2+Cai));
    h_IP3_inf = Q_2/(Q_2+Cai);
    ode(h_IP3, t) = (h_IP3_inf-h_IP3)/(tau_hIP3/1000{millis_per_s});
    j_IP3 = -k_IP3*pow(m_IP3_inf, 3{dimensionless})*pow(h_IP3, 3{dimensionless})*(Cai-Ca_ER);
    j_leak_Ca = -k_leak_Ca*(Ca_bulk-Ca_ER_pre);
    j_SERCA = -k_SERCA*(pow(Ca_bulk/K_mf, H_SERCA)-pow(Ca_ER_pre/K_mr, H_SERCA))/(1{dimensionless}+pow(Ca_bulk/K_mf, H_SERCA)+pow(Ca_ER_pre/K_mr, H_SERCA));
    c_RyR_inf = 1{dimensionless}/(1{dimensionless}+exp(-(Cai-Cai_RyR_mid)/Cai_RyR_den));
    // deactivated by Ca_ER decreasing, so also activated by Ca_ER
    hc_RyR_inf = 1{dimensionless}/(1{dimensionless}+exp(-(Ca_ER-Ca_ER_RyR_mid)/Ca_ER_RyR_den));
    ode(c_RyR, t) = (c_RyR_inf-c_RyR)/(tau_c_RyR/1000{millis_per_s});
    // tau_hc_RyR = tau_hc_RyR_min; // + 200{millis}/(exp((Ca_ER-Ca_ER_RyR_tau_mid)/Ca_ER_RyR_tau_den)+exp(-(Ca_ER-Ca_ER_RyR_tau_mid)/Ca_ER_RyR_tau_den));
    ode(hc_RyR, t) = (hc_RyR_inf-hc_RyR)/(tau_hc_RyR/1000{millis_per_s});
    // TODO include cAMP dependence
    // TODO should it be c_RyR^3, to be more similar to
    j_RyR = k_RyR*(Ca_ER-Cai)*pow(c_RyR, 3{dimensionless})*pow(hc_RyR, 3{dimensionless});
    ode(B_Cai, t) = k_unbind_Ca*CaB_Cai-k_bind_Ca*Cai*B_Cai;
    CaB_Cai = B_Ca_total-B_Cai;
    ode(B_Ca_bulk, t) = k_unbind_Ca*CaB_Ca_bulk-k_bind_Ca*Ca_bulk*B_Ca_bulk;
    CaB_Ca_bulk = B_Ca_total-B_Ca_bulk;
    ode(B_Ca_ER_pre, t) = k_unbind_Ca_ER*CaB_Ca_ER_pre-k_bind_Ca_ER*Ca_ER_pre*B_Ca_ER_pre;
    CaB_Ca_ER_pre = B_Ca_total-B_Ca_ER_pre;
    j_Ca_N = -i_Ca_N/(2{dimensionless}*F)*1e-9{A_per_nanoA};
    j_NaCa_Ca = i_NaCa/F*1e-9{A_per_nanoA};
    j_diffCa = -D_Ca*(Cai-Ca_bulk);
    j_diffCa_ER = D_Ca_ER*(Ca_ER_pre-Ca_ER);
    ode(Cai, t) = 1{dimensionless}/(Vol*c_SL)*(j_Ca_N+j_NaCa_Ca+j_IP3+j_RyR+j_leak_Ca+j_diffCa)+k_unbind_Ca*CaB_Cai-k_bind_Ca*Cai*B_Cai;
    ode(Ca_bulk, t) = 1{dimensionless}/(Vol*c_bulk)*(j_SERCA-j_diffCa)+k_unbind_Ca*CaB_Ca_bulk-k_bind_Ca*Ca_bulk*B_Ca_bulk;
    ode(Ca_ER_pre, t) = 1{dimensionless}/(Vol*c_ER_pre)*(-j_SERCA-j_leak_Ca-j_diffCa_ER)+k_unbind_Ca_ER*CaB_Ca_ER_pre-k_bind_Ca_ER*Ca_ER_pre*B_Ca_ER_pre;
    ode(Ca_ER, t) = 1{dimensionless}/(Vol*c_ER)*(-j_IP3-j_RyR+j_diffCa_ER);
    ode(NE, t) = k_NE*max(Cai-Cai_NE_base, 0{mol_per_m3})-k_NET*(NE-NE_init);
  enddef;

  def comp terminal_venous_connection as
  enddef;

  def comp generic_junction_connection as
  enddef;

  def comp soma_SN as
    var i_Na: nanoA {interface: public};
    var i_Na1_6: nanoA {interface: public};
    var i_Ca_L: nanoA {interface: public};
    var i_Kv2: nanoA {interface: public};
    var i_Kv1_5: nanoA {interface: public};
    var i_Kv4_2: nanoA {interface: public};
    var i_KCa_BK: nanoA {interface: public};
    var i_KCa_SK: nanoA {interface: public};
    var V: milliV {interface: public};
    var V_rest_approx: milliV {interface: public};
    var m: dimensionless {interface: public};
    var m_inf: dimensionless {interface: public};
    var m_init: dimensionless {interface: public};
    var h: dimensionless {interface: public};
    var h_inf: dimensionless {interface: public};
    var h_init: dimensionless {interface: public};
    var m_Na1_6: dimensionless {interface: public};
    var m_Na1_6_inf: dimensionless {interface: public};
    var m_Na1_6_init: dimensionless {interface: public};
    var h_Na1_6: dimensionless {interface: public};
    var h_Na1_6_inf: dimensionless {interface: public};
    var h_Na1_6_init: dimensionless {interface: public};
    var c: dimensionless {interface: public};
    var c_inf: dimensionless {interface: public};
    var c_init: dimensionless {interface: public};
    var hc: dimensionless {interface: public};
    var hc_inf: dimensionless {interface: public};
    var hc_init: dimensionless {interface: public};
    var m_Kv2: dimensionless {interface: public};
    var m_Kv2_init: dimensionless {interface: public};
    var m_Kv2_inf: dimensionless {interface: public};
    var m_Kv1_5: dimensionless {interface: public};
    var m_Kv1_5_init: dimensionless {interface: public};
    var m_Kv1_5_inf: dimensionless {interface: public};
    var h_Kv1_5: dimensionless {interface: public};
    var h_Kv1_5_init: dimensionless {interface: public};
    var h_Kv1_5_inf: dimensionless {interface: public};
    var m_Kv4_2: dimensionless {interface: public};
    var m_Kv4_2_init: dimensionless {interface: public};
    var m_Kv4_2_inf: dimensionless {interface: public};
    var h_Kv4_2: dimensionless {interface: public};
    var h_Kv4_2_init: dimensionless {interface: public};
    var h_Kv4_2_inf: dimensionless {interface: public};
    var m_BK: dimensionless {interface: public};
    var m_BK_inf: dimensionless {interface: public};
    var m_BK_init: dimensionless {interface: public};
    var h_BK: dimensionless {interface: public};
    var h_BK_inf: dimensionless {interface: public};
    var h_BK_init: dimensionless {interface: public};
    var h_BK_min: dimensionless {interface: public};
    var z_BK: dimensionless {interface: public};
    var z_BK_inf: dimensionless {interface: public};
    var z_BK_init: dimensionless {interface: public};
    var z_BK_coeff: millimolar {interface: public};
    var m_SK: dimensionless {interface: public};
    var m_SK_inf: dimensionless {interface: public};
    var m_SK_init: dimensionless {interface: public};
    var V_mid_m: milliV {interface: public};
    var V_mid_h: milliV {interface: public};
    var V_den_m: milliV {interface: public};
    var V_den_h: milliV {interface: public};
    var V_mid_m_Na1_6: milliV {interface: public};
    var V_mid_h_Na1_6: milliV {interface: public};
    var V_den_m_Na1_6: milliV {interface: public};
    var V_den_h_Na1_6: milliV {interface: public};
    var V_mid_c: milliV {interface: public};
    var V_den_c: milliV {interface: public};
    var V_mid_hc: milliV {interface: public};
    var V_den_hc: milliV {interface: public};
    var V_mid_m_Kv1_5: milliV {interface: public};
    var V_den_m_Kv1_5: milliV {interface: public};
    var V_mid_h_Kv1_5: milliV {interface: public};
    var V_den_h_Kv1_5: milliV {interface: public};
    var V_mid_m_Kv4_2: milliV {interface: public};
    var V_den_m_Kv4_2: milliV {interface: public};
    var V_mid_h_Kv4_2: milliV {interface: public};
    var V_den_h_Kv4_2: milliV {interface: public};
    var V_mid_m_Kv2: milliV {interface: public};
    var V_den_m_Kv2: milliV {interface: public};
    var V_mid_w: milliV {interface: public};
    var Delta_V_mid_w: milliV {interface: public};
    var V_den_w: milliV {interface: public};
    var V_mid_m_BK: milliV {interface: public};
    var V_den_m_BK: milliV {interface: public};
    var V_mid_h_BK: milliV {interface: public};
    var V_den_h_BK: milliV {interface: public};
    var k_thresh_m: milliV {interface: public};
    var k_thresh_h: milliV {interface: public};
    var tau_m: millis {interface: public};
    var tau_h: millis {interface: public};
    var tau_h_min: millis {interface: public};
    var tau_h_max: millis {interface: public};
    var tau_m_Na1_6: millis {interface: public};
    var tau_h_Na1_6: millis {interface: public};
    var tau_h_Na1_6_min: millis {interface: public};
    var tau_h_Na1_6_max: millis {interface: public};
    var tau_w_min: millis {interface: public};
    var tau_c: millis {interface: public};
    var tau_c_min: millis {interface: public};
    var tau_c_max: millis {interface: public};
    var tau_hc: millis {interface: public};
    var tau_m_Kv2: millis {interface: public};
    var tau_m_Kv1_5: millis {interface: public};
    var tau_h_Kv1_5: millis {interface: public};
    var tau_m_Kv4_2: millis {interface: public};
    var tau_h_Kv4_2: millis {interface: public};
    var tau_m_BK: millis {interface: public};
    var tau_h_BK: millis {interface: public};
    var tau_z_BK: millis {interface: public};
    var tau_m_SK: millis {interface: public};
    var R_diffSensed: megaOhm {interface: public};
    var V_sensed: milliV {interface: public};
    var C_sensed: picoF {interface: public};
    var p_SK: dimensionless {interface: public};
    var Cai: millimolar {interface: public};
    var Cai_init: millimolar {interface: public};
    var Ca_mid_m_SK: millimolar {interface: public};
    var B_Cai: millimolar {interface: public};
    var B_Ca_init: millimolar {interface: public};
    var B_Ca_total: millimolar {interface: public};
    var CaB_Cai: millimolar {interface: public};
    var B_Ca_bulk: millimolar {interface: public};
    var CaB_Ca_bulk: millimolar {interface: public};
    var B_Ca_ER_pre: millimolar {interface: public};
    var CaB_Ca_ER_pre: millimolar {interface: public};
    var k_bind_Ca: per_millimolar_s {interface: public};
    var k_unbind_Ca: per_s {interface: public};
    var k_bind_Ca_ER: per_millimolar_s {interface: public};
    var k_unbind_Ca_ER: per_s {interface: public};
    var Nai: millimolar {interface: public};
    var Nai_init: millimolar {interface: public};
    var Ki: millimolar {interface: public};
    var Ki_init: millimolar {interface: public};
    var R: J_per_mol_K {interface: public};
    var F: C_per_mol {interface: public};
    var T: kelvin {interface: public};
    var g_Na: microS {interface: public};
    var g_Na_mod: dimensionless {interface: public};
    var g_Na1_6: microS {interface: public};
    var g_Na1_6_mod: dimensionless {interface: public};
    var Cm: picoF {interface: public};
    var E_K: milliV {interface: public};
    var E_Na: milliV {interface: public};
    var E_K_init: milliV {interface: public};
    var E_Na_init: milliV {interface: public};
    var p_Ca: m3_per_s {interface: public};
    var g_Kv1_5: microS {interface: public};
    var g_Kv4_2: microS {interface: public};
    var g_Kv2: microS {interface: public};
    var g_KCa_BK: microS {interface: public};
    var g_KCa_SK: microS {interface: public};
    var g_KCa_SK_mod: dimensionless {interface: public};
    var Vol: m3 {interface: public};
    var Cao: millimolar {interface: public};
    var Ko: millimolar {interface: public};
    var Nao: millimolar {interface: public};
    var i_M: nanoA {interface: public};
    var g_M: microS {interface: public};
    var g_M_mod: dimensionless {interface: public};
    var g_leak_Na: microS {interface: public};
    var g_leak_K: microS {interface: public};
    var delta_gM: microS {interface: public};
    var w: dimensionless {interface: public};
    var w_inf: dimensionless {interface: public};
    var w_init: dimensionless {interface: public};
    var tau_w: millis {interface: public};
    var tau_w_num: millis {interface: public};
    var cAMP: dimensionless {interface: public};
    var i_leak_K: nanoA {interface: public};
    var i_leak_Na: nanoA {interface: public};
    var I_in: nanoA {interface: public};
    var I_in_delayed: nanoA {interface: public};
    var i_NaCa: nanoA {interface: public};
    var k_NaCa: nanoA {interface: public};
    var alpha_NaCa: dimensionless {interface: public};
    var gamma_NaCa: dimensionless {interface: public};
    var Ksat: dimensionless {interface: public};
    var KmCa: millimolar {interface: public};
    var KmNai: millimolar {interface: public};
    var i_NaK: nanoA {interface: public};
    var k_NaK: nanoA {interface: public};
    var Nai_mid_NaK: millimolar {interface: public};
    var Nai_power_NaK: dimensionless {interface: public};
    var Ko_mid_NaK: millimolar {interface: public};
    var Ca_ER: millimolar {interface: public};
    var Ca_ER_init: millimolar {interface: public};
    var j_Na: mol_per_s {interface: public};
    var j_Na1_6: mol_per_s {interface: public};
    var j_Kv1_5: mol_per_s {interface: public};
    var j_Kv4_2: mol_per_s {interface: public};
    var j_Kv2: mol_per_s {interface: public};
    var j_KCa_BK: mol_per_s {interface: public};
    var j_KCa_SK: mol_per_s {interface: public};
    var j_KM: mol_per_s {interface: public};
    var j_Ca_L: mol_per_s {interface: public};
    var j_NaCa_Na: mol_per_s {interface: public};
    var j_NaCa_Ca: mol_per_s {interface: public};
    var j_NaK_Na: mol_per_s {interface: public};
    var j_NaK_K: mol_per_s {interface: public};
    var j_leak_Na: mol_per_s {interface: public};
    var j_leak_K: mol_per_s {interface: public};
    var j_IP3: mol_per_s {interface: public};
    var j_leak_Ca: mol_per_s {interface: public};
    var j_SERCA: mol_per_s {interface: public};
    var K_mf: millimolar {interface: public};
    var K_mr: millimolar {interface: public};
    var k_SERCA: mol_per_s {interface: public};
    var H_SERCA: dimensionless {interface: public};
    var j_RyR: mol_per_s {interface: public};
    var k_RyR: m3_per_s {interface: public};
    var c_RyR: dimensionless {interface: public};
    var hc_RyR: dimensionless {interface: public};
    var c_RyR_inf: dimensionless {interface: public};
    var hc_RyR_inf: dimensionless {interface: public};
    var tau_c_RyR: millis {interface: public};
    var tau_hc_RyR: millis {interface: public};
    var Cai_RyR_mid: millimolar {interface: public};
    var Cai_RyR_den: millimolar {interface: public};
    var Ca_ER_RyR_mid: millimolar {interface: public};
    var Ca_ER_RyR_den: millimolar {interface: public};
    var Ca_ER_RyR_tau_mid: millimolar {interface: public};
    var Ca_ER_RyR_tau_den: millimolar {interface: public};
    var c_ER: dimensionless {interface: public};
    var c_SL: dimensionless {interface: public};
    var c_bulk: dimensionless {interface: public};
    var k_IP3: m3_per_s {interface: public};
    var k_leak_Ca: m3_per_s {interface: public};
    var m_IP3_inf: dimensionless {interface: public};
    var h_IP3_init: dimensionless {interface: public};
    var h_IP3: dimensionless {interface: public};
    var h_IP3_inf: dimensionless {interface: public};
    var tau_hIP3: millis {interface: public};
    var IP3: millimolar {interface: public};
    var a_2: per_millimolar {interface: public};
    var d_1: millimolar {interface: public};
    var d_2: millimolar {interface: public};
    var d_3: millimolar {interface: public};
    var d_5: millimolar {interface: public};
    var Q_2: millimolar {interface: public};
    var Ca_bulk: millimolar {interface: public};
    var j_diffCa: mol_per_s {interface: public};
    var D_Ca: m3_per_s {interface: public};
    var c_ER_pre: dimensionless {interface: public};
    var Ca_ER_pre: millimolar {interface: public};
    var j_diffCa_ER: mol_per_s {interface: public};
    var D_Ca_ER: m3_per_s {interface: public};
  enddef;

  def comp axon_SN as
    var I: nanoA {interface: public};
    var I_channels: nanoA {interface: public};
    var channel_ratio: dimensionless {interface: public};
    var C: picoF {interface: public};
    var R: megaOhm {interface: public};
    var V_rest_approx: milliV {interface: public};
    var V: milliV {interface: public};
  enddef;

  def comp var_SN as
    var i_Ca_N: nanoA {interface: public};
    var c: dimensionless {interface: public};
    var c_init: dimensionless {interface: public};
    var c_inf: dimensionless {interface: public};
    var hc: dimensionless {interface: public};
    var hc_inf: dimensionless {interface: public};
    var hc_init: dimensionless {interface: public};
    var V_mid_c: milliV {interface: public};
    var V_den_c: milliV {interface: public};
    var V_mid_hc: milliV {interface: public};
    var V_den_hc: milliV {interface: public};
    var tau_c: millis {interface: public};
    var tau_c_min: millis {interface: public};
    var tau_c_max: millis {interface: public};
    var tau_hc: millis {interface: public};
    var Cai: millimolar {interface: public};
    var Cai_init: millimolar {interface: public};
    var B_Cai: millimolar {interface: public};
    var B_Ca_init: millimolar {interface: public};
    var B_Ca_total: millimolar {interface: public};
    var CaB_Cai: millimolar {interface: public};
    var B_Ca_bulk: millimolar {interface: public};
    var CaB_Ca_bulk: millimolar {interface: public};
    var B_Ca_ER_pre: millimolar {interface: public};
    var CaB_Ca_ER_pre: millimolar {interface: public};
    var k_bind_Ca: per_millimolar_s {interface: public};
    var k_unbind_Ca: per_s {interface: public};
    var k_bind_Ca_ER: per_millimolar_s {interface: public};
    var k_unbind_Ca_ER: per_s {interface: public};
    var Nai: millimolar {interface: public};
    var Nao: millimolar {interface: public};
    var NE: millimolar {interface: public};
    var NE_init: millimolar {interface: public};
    var Cai_NE_base: millimolar {interface: public};
    var k_NE: per_s {interface: public};
    var k_NET: per_s {interface: public};
    var N_avo: per_mol {interface: public};
    var R: J_per_mol_K {interface: public};
    var F: C_per_mol {interface: public};
    var T: kelvin {interface: public};
    var E_Ca: milliV {interface: public};
    var g_CaN: microS {interface: public};
    var Vol: m3 {interface: public};
    var Cao: millimolar {interface: public};
    var cAMP: dimensionless {interface: public};
    var i_NaCa: nanoA {interface: public};
    var k_NaCa: nanoA {interface: public};
    var alpha_NaCa: dimensionless {interface: public};
    var gamma_NaCa: dimensionless {interface: public};
    var Ksat: dimensionless {interface: public};
    var KmCa: millimolar {interface: public};
    var KmNai: millimolar {interface: public};
    var Ca_ER: millimolar {interface: public};
    var Ca_ER_init: millimolar {interface: public};
    var j_Ca_N: mol_per_s {interface: public};
    var j_NaCa_Ca: mol_per_s {interface: public};
    var j_IP3: mol_per_s {interface: public};
    var j_leak_Ca: mol_per_s {interface: public};
    var j_SERCA: mol_per_s {interface: public};
    var K_mf: millimolar {interface: public};
    var K_mr: millimolar {interface: public};
    var k_SERCA: mol_per_s {interface: public};
    var H_SERCA: dimensionless {interface: public};
    var j_RyR: mol_per_s {interface: public};
    var c_RyR: dimensionless {interface: public};
    var hc_RyR: dimensionless {interface: public};
    var c_RyR_inf: dimensionless {interface: public};
    var hc_RyR_inf: dimensionless {interface: public};
    var tau_c_RyR: millis {interface: public};
    var tau_hc_RyR: millis {interface: public};
    var k_RyR: m3_per_s {interface: public};
    var Cai_RyR_mid: millimolar {interface: public};
    var Cai_RyR_den: millimolar {interface: public};
    var Ca_ER_RyR_mid: millimolar {interface: public};
    var Ca_ER_RyR_den: millimolar {interface: public};
    var Ca_ER_RyR_tau_mid: millimolar {interface: public};
    var Ca_ER_RyR_tau_den: millimolar {interface: public};
    var k_IP3: m3_per_s {interface: public};
    var k_leak_Ca: m3_per_s {interface: public};
    var m_IP3_inf: dimensionless {interface: public};
    var h_IP3_init: dimensionless {interface: public};
    var h_IP3: dimensionless {interface: public};
    var h_IP3_inf: dimensionless {interface: public};
    var tau_hIP3: millis {interface: public};
    var IP3: millimolar {interface: public};
    var a_2: per_millimolar {interface: public};
    var d_1: millimolar {interface: public};
    var d_2: millimolar {interface: public};
    var d_3: millimolar {interface: public};
    var d_5: millimolar {interface: public};
    var Q_2: millimolar {interface: public};
    var c_ER: dimensionless {interface: public};
    var c_SL: dimensionless {interface: public};
    var c_bulk: dimensionless {interface: public};
    var Ca_bulk: millimolar {interface: public};
    var j_diffCa: mol_per_s {interface: public};
    var D_Ca: m3_per_s {interface: public};
    var c_ER_pre: dimensionless {interface: public};
    var Ca_ER_pre: millimolar {interface: public};
    var j_diffCa_ER: mol_per_s {interface: public};
    var D_Ca_ER: m3_per_s {interface: public};
  enddef;

  def comp global as
    var R: J_per_mol_K {interface: public};
    var F: C_per_mol {interface: public};
    var T: kelvin {interface: public};
    var N_avo: per_mol {interface: public};
  enddef;
  def map between parameters and soma_SN_module for
    vars V_rest_approx_soma_SN and V_rest_approx;
    vars h_BK_min_soma_SN and h_BK_min;
    vars z_BK_coeff_soma_SN and z_BK_coeff;
    vars V_mid_m_soma_SN and V_mid_m;
    vars V_mid_h_soma_SN and V_mid_h;
    vars V_den_m_soma_SN and V_den_m;
    vars V_den_h_soma_SN and V_den_h;
    vars V_mid_m_Na1_6_soma_SN and V_mid_m_Na1_6;
    vars V_mid_h_Na1_6_soma_SN and V_mid_h_Na1_6;
    vars V_den_m_Na1_6_soma_SN and V_den_m_Na1_6;
    vars V_den_h_Na1_6_soma_SN and V_den_h_Na1_6;
    vars V_mid_c_soma_SN and V_mid_c;
    vars V_den_c_soma_SN and V_den_c;
    vars V_mid_m_Kv1_5_soma_SN and V_mid_m_Kv1_5;
    vars V_den_m_Kv1_5_soma_SN and V_den_m_Kv1_5;
    vars V_mid_h_Kv1_5_soma_SN and V_mid_h_Kv1_5;
    vars V_den_h_Kv1_5_soma_SN and V_den_h_Kv1_5;
    vars V_mid_m_Kv4_2_soma_SN and V_mid_m_Kv4_2;
    vars V_den_m_Kv4_2_soma_SN and V_den_m_Kv4_2;
    vars V_mid_h_Kv4_2_soma_SN and V_mid_h_Kv4_2;
    vars V_den_h_Kv4_2_soma_SN and V_den_h_Kv4_2;
    vars V_mid_m_Kv2_soma_SN and V_mid_m_Kv2;
    vars V_den_m_Kv2_soma_SN and V_den_m_Kv2;
    vars V_mid_w_soma_SN and V_mid_w;
    vars Delta_V_mid_w_soma_SN and Delta_V_mid_w;
    vars V_den_w_soma_SN and V_den_w;
    vars V_den_m_BK_soma_SN and V_den_m_BK;
    vars V_mid_h_BK_soma_SN and V_mid_h_BK;
    vars V_den_h_BK_soma_SN and V_den_h_BK;
    vars k_thresh_m_soma_SN and k_thresh_m;
    vars k_thresh_h_soma_SN and k_thresh_h;
    vars tau_h_min_soma_SN and tau_h_min;
    vars tau_h_max_soma_SN and tau_h_max;
    vars tau_h_Na1_6_min_soma_SN and tau_h_Na1_6_min;
    vars tau_h_Na1_6_max_soma_SN and tau_h_Na1_6_max;
    vars tau_w_min_soma_SN and tau_w_min;
    vars tau_c_min_soma_SN and tau_c_min;
    vars tau_c_max_soma_SN and tau_c_max;
    vars tau_hc_soma_SN and tau_hc;
    vars tau_h_Kv4_2_soma_SN and tau_h_Kv4_2;
    vars tau_z_BK_soma_SN and tau_z_BK;
    vars tau_m_SK_soma_SN and tau_m_SK;
    vars R_diffSensed_soma_SN and R_diffSensed;
    vars C_sensed_soma_SN and C_sensed;
    vars p_SK_soma_SN and p_SK;
    vars Cai_init_soma_SN and Cai_init;
    vars Ca_mid_m_SK_soma_SN and Ca_mid_m_SK;
    vars B_Ca_init_soma_SN and B_Ca_init;
    vars B_Ca_total_soma_SN and B_Ca_total;
    vars k_bind_Ca_soma_SN and k_bind_Ca;
    vars k_unbind_Ca_soma_SN and k_unbind_Ca;
    vars k_bind_Ca_ER_soma_SN and k_bind_Ca_ER;
    vars k_unbind_Ca_ER_soma_SN and k_unbind_Ca_ER;
    vars Nai_init_soma_SN and Nai_init;
    vars Ki_init_soma_SN and Ki_init;
    vars g_Na_soma_SN and g_Na;
    vars g_Na_mod_soma_SN and g_Na_mod;
    vars g_Na1_6_soma_SN and g_Na1_6;
    vars g_Na1_6_mod_soma_SN and g_Na1_6_mod;
    vars Cm_soma_SN and Cm;
    vars p_Ca_soma_SN and p_Ca;
    vars g_Kv1_5_soma_SN and g_Kv1_5;
    vars g_Kv4_2_soma_SN and g_Kv4_2;
    vars g_Kv2_soma_SN and g_Kv2;
    vars g_KCa_BK_soma_SN and g_KCa_BK;
    vars g_KCa_SK_soma_SN and g_KCa_SK;
    vars g_KCa_SK_mod_soma_SN and g_KCa_SK_mod;
    vars Vol_soma_SN and Vol;
    vars Cao_soma_SN and Cao;
    vars Ko_soma_SN and Ko;
    vars Nao_soma_SN and Nao;
    vars g_M_soma_SN and g_M;
    vars g_M_mod_soma_SN and g_M_mod;
    vars g_leak_Na_soma_SN and g_leak_Na;
    vars g_leak_K_soma_SN and g_leak_K;
    vars delta_gM_soma_SN and delta_gM;
    vars tau_w_num_soma_SN and tau_w_num;
    vars cAMP_soma_SN and cAMP;
    vars k_NaCa_soma_SN and k_NaCa;
    vars alpha_NaCa_soma_SN and alpha_NaCa;
    vars gamma_NaCa_soma_SN and gamma_NaCa;
    vars Ksat_soma_SN and Ksat;
    vars KmCa_soma_SN and KmCa;
    vars KmNai_soma_SN and KmNai;
    vars k_NaK_soma_SN and k_NaK;
    vars Nai_mid_NaK_soma_SN and Nai_mid_NaK;
    vars Nai_power_NaK_soma_SN and Nai_power_NaK;
    vars Ko_mid_NaK_soma_SN and Ko_mid_NaK;
    vars Ca_ER_init_soma_SN and Ca_ER_init;
    vars K_mf_soma_SN and K_mf;
    vars K_mr_soma_SN and K_mr;
    vars k_SERCA_soma_SN and k_SERCA;
    vars H_SERCA_soma_SN and H_SERCA;
    vars k_RyR_soma_SN and k_RyR;
    vars tau_c_RyR_soma_SN and tau_c_RyR;
    vars tau_hc_RyR_soma_SN and tau_hc_RyR;
    vars Cai_RyR_mid_soma_SN and Cai_RyR_mid;
    vars Cai_RyR_den_soma_SN and Cai_RyR_den;
    vars Ca_ER_RyR_mid_soma_SN and Ca_ER_RyR_mid;
    vars Ca_ER_RyR_den_soma_SN and Ca_ER_RyR_den;
    vars Ca_ER_RyR_tau_mid_soma_SN and Ca_ER_RyR_tau_mid;
    vars Ca_ER_RyR_tau_den_soma_SN and Ca_ER_RyR_tau_den;
    vars c_ER_soma_SN and c_ER;
    vars c_SL_soma_SN and c_SL;
    vars k_IP3_soma_SN and k_IP3;
    vars k_leak_Ca_soma_SN and k_leak_Ca;
    vars h_IP3_init_soma_SN and h_IP3_init;
    vars IP3_soma_SN and IP3;
    vars a_2_soma_SN and a_2;
    vars d_1_soma_SN and d_1;
    vars d_2_soma_SN and d_2;
    vars d_3_soma_SN and d_3;
    vars d_5_soma_SN and d_5;
    vars D_Ca_soma_SN and D_Ca;
    vars c_ER_pre_soma_SN and c_ER_pre;
    vars D_Ca_ER_soma_SN and D_Ca_ER;
    vars I_in_soma_SN and I_in;
  enddef;
  def map between parameters and axon_SN_module for
    vars channel_ratio_axon_SN and channel_ratio;
    vars C_axon_SN and C;
    vars R_axon_SN and R;
    vars V_rest_approx_axon_SN and V_rest_approx;
  enddef;
  def map between parameters and var_SN_module for
    vars c_init_var_SN and c_init;
    vars hc_init_var_SN and hc_init;
    vars V_mid_c_var_SN and V_mid_c;
    vars V_den_c_var_SN and V_den_c;
    vars tau_c_min_var_SN and tau_c_min;
    vars tau_c_max_var_SN and tau_c_max;
    vars tau_hc_var_SN and tau_hc;
    vars Cai_init_var_SN and Cai_init;
    vars B_Ca_init_var_SN and B_Ca_init;
    vars B_Ca_total_var_SN and B_Ca_total;
    vars k_bind_Ca_var_SN and k_bind_Ca;
    vars k_unbind_Ca_var_SN and k_unbind_Ca;
    vars k_bind_Ca_ER_var_SN and k_bind_Ca_ER;
    vars k_unbind_Ca_ER_var_SN and k_unbind_Ca_ER;
    vars Nai_var_SN and Nai;
    vars Nao_var_SN and Nao;
    vars NE_init_var_SN and NE_init;
    vars Cai_NE_base_var_SN and Cai_NE_base;
    vars k_NE_var_SN and k_NE;
    vars k_NET_var_SN and k_NET;
    vars g_CaN_var_SN and g_CaN;
    vars Vol_var_SN and Vol;
    vars Cao_var_SN and Cao;
    vars cAMP_var_SN and cAMP;
    vars k_NaCa_var_SN and k_NaCa;
    vars alpha_NaCa_var_SN and alpha_NaCa;
    vars gamma_NaCa_var_SN and gamma_NaCa;
    vars Ksat_var_SN and Ksat;
    vars KmCa_var_SN and KmCa;
    vars KmNai_var_SN and KmNai;
    vars Ca_ER_init_var_SN and Ca_ER_init;
    vars K_mf_var_SN and K_mf;
    vars K_mr_var_SN and K_mr;
    vars k_SERCA_var_SN and k_SERCA;
    vars H_SERCA_var_SN and H_SERCA;
    vars tau_c_RyR_var_SN and tau_c_RyR;
    vars tau_hc_RyR_var_SN and tau_hc_RyR;
    vars k_RyR_var_SN and k_RyR;
    vars Cai_RyR_mid_var_SN and Cai_RyR_mid;
    vars Cai_RyR_den_var_SN and Cai_RyR_den;
    vars Ca_ER_RyR_mid_var_SN and Ca_ER_RyR_mid;
    vars Ca_ER_RyR_den_var_SN and Ca_ER_RyR_den;
    vars Ca_ER_RyR_tau_mid_var_SN and Ca_ER_RyR_tau_mid;
    vars Ca_ER_RyR_tau_den_var_SN and Ca_ER_RyR_tau_den;
    vars k_IP3_var_SN and k_IP3;
    vars k_leak_Ca_var_SN and k_leak_Ca;
    vars h_IP3_init_var_SN and h_IP3_init;
    vars IP3_var_SN and IP3;
    vars a_2_var_SN and a_2;
    vars d_1_var_SN and d_1;
    vars d_2_var_SN and d_2;
    vars d_3_var_SN and d_3;
    vars d_5_var_SN and d_5;
    vars c_ER_var_SN and c_ER;
    vars c_SL_var_SN and c_SL;
    vars D_Ca_var_SN and D_Ca;
    vars c_ER_pre_var_SN and c_ER_pre;
    vars D_Ca_ER_var_SN and D_Ca_ER;
  enddef;
  def map between parameters_global and global for
    vars R and R;
    vars F and F;
    vars T and T;
    vars N_avo and N_avo;
  enddef;
  def map between parameters_global and soma_SN_module for
    vars R and R;
    vars F and F;
    vars T and T;
  enddef;
  def map between parameters_global and var_SN_module for
    vars R and R;
    vars F and F;
    vars T and T;
    vars N_avo and N_avo;
  enddef;
  def map between environment and soma_SN_module for
    vars time and t;
  enddef;
  def map between environment and axon_SN_module for
    vars time and t;
  enddef;
  def map between environment and var_SN_module for
    vars time and t;
  enddef;
  def map between soma_SN_module and soma_SN for
    vars R and R;
    vars F and F;
    vars T and T;
    vars c_ER_pre and c_ER_pre;
    vars c_ER and c_ER;
    vars c_SL and c_SL;
    vars c_bulk and c_bulk;
    vars Vol and Vol;
    vars I_in and I_in;
    vars E_K and E_K;
    vars E_Na and E_Na;
    vars E_K_init and E_K_init;
    vars E_Na_init and E_Na_init;
    vars Cm and Cm;
    vars V_rest_approx and V_rest_approx;
    vars V and V;
    vars V_sensed and V_sensed;
    vars C_sensed and C_sensed;
    vars I_in_delayed and I_in_delayed;
    vars R_diffSensed and R_diffSensed;
    vars i_Na and i_Na;
    vars g_Na and g_Na;
    vars g_Na_mod and g_Na_mod;
    vars m_init and m_init;
    vars m and m;
    vars h_init and h_init;
    vars h and h;
    vars V_mid_m and V_mid_m;
    vars V_den_m and V_den_m;
    vars V_mid_h and V_mid_h;
    vars V_den_h and V_den_h;
    vars m_inf and m_inf;
    vars h_inf and h_inf;
    vars tau_m and tau_m;
    vars tau_h and tau_h;
    vars tau_h_min and tau_h_min;
    vars tau_h_max and tau_h_max;
    vars k_thresh_m and k_thresh_m;
    vars k_thresh_h and k_thresh_h;
    vars i_Na1_6 and i_Na1_6;
    vars g_Na1_6 and g_Na1_6;
    vars g_Na1_6_mod and g_Na1_6_mod;
    vars m_Na1_6_init and m_Na1_6_init;
    vars m_Na1_6 and m_Na1_6;
    vars h_Na1_6_init and h_Na1_6_init;
    vars h_Na1_6 and h_Na1_6;
    vars V_mid_m_Na1_6 and V_mid_m_Na1_6;
    vars V_den_m_Na1_6 and V_den_m_Na1_6;
    vars V_mid_h_Na1_6 and V_mid_h_Na1_6;
    vars V_den_h_Na1_6 and V_den_h_Na1_6;
    vars m_Na1_6_inf and m_Na1_6_inf;
    vars h_Na1_6_inf and h_Na1_6_inf;
    vars tau_m_Na1_6 and tau_m_Na1_6;
    vars tau_h_Na1_6 and tau_h_Na1_6;
    vars tau_h_Na1_6_min and tau_h_Na1_6_min;
    vars tau_h_Na1_6_max and tau_h_Na1_6_max;
    vars i_Ca_L and i_Ca_L;
    vars p_Ca and p_Ca;
    vars c_init and c_init;
    vars c and c;
    vars hc_init and hc_init;
    vars hc and hc;
    vars c_inf and c_inf;
    vars hc_inf and hc_inf;
    vars tau_c and tau_c;
    vars tau_hc and tau_hc;
    vars tau_c_min and tau_c_min;
    vars tau_c_max and tau_c_max;
    vars V_mid_c and V_mid_c;
    vars V_den_c and V_den_c;
    vars V_mid_hc and V_mid_hc;
    vars V_den_hc and V_den_hc;
    vars i_Kv2 and i_Kv2;
    vars g_Kv2 and g_Kv2;
    vars m_Kv2_init and m_Kv2_init;
    vars m_Kv2 and m_Kv2;
    vars m_Kv2_inf and m_Kv2_inf;
    vars tau_m_Kv2 and tau_m_Kv2;
    vars V_mid_m_Kv2 and V_mid_m_Kv2;
    vars V_den_m_Kv2 and V_den_m_Kv2;
    vars i_Kv1_5 and i_Kv1_5;
    vars g_Kv1_5 and g_Kv1_5;
    vars m_Kv1_5_init and m_Kv1_5_init;
    vars m_Kv1_5 and m_Kv1_5;
    vars h_Kv1_5_init and h_Kv1_5_init;
    vars h_Kv1_5 and h_Kv1_5;
    vars m_Kv1_5_inf and m_Kv1_5_inf;
    vars h_Kv1_5_inf and h_Kv1_5_inf;
    vars tau_m_Kv1_5 and tau_m_Kv1_5;
    vars tau_h_Kv1_5 and tau_h_Kv1_5;
    vars V_mid_m_Kv1_5 and V_mid_m_Kv1_5;
    vars V_den_m_Kv1_5 and V_den_m_Kv1_5;
    vars V_mid_h_Kv1_5 and V_mid_h_Kv1_5;
    vars V_den_h_Kv1_5 and V_den_h_Kv1_5;
    vars i_Kv4_2 and i_Kv4_2;
    vars g_Kv4_2 and g_Kv4_2;
    vars m_Kv4_2_init and m_Kv4_2_init;
    vars m_Kv4_2 and m_Kv4_2;
    vars h_Kv4_2_init and h_Kv4_2_init;
    vars h_Kv4_2 and h_Kv4_2;
    vars m_Kv4_2_inf and m_Kv4_2_inf;
    vars h_Kv4_2_inf and h_Kv4_2_inf;
    vars tau_m_Kv4_2 and tau_m_Kv4_2;
    vars tau_h_Kv4_2 and tau_h_Kv4_2;
    vars V_mid_m_Kv4_2 and V_mid_m_Kv4_2;
    vars V_den_m_Kv4_2 and V_den_m_Kv4_2;
    vars V_mid_h_Kv4_2 and V_mid_h_Kv4_2;
    vars V_den_h_Kv4_2 and V_den_h_Kv4_2;
    vars g_KCa_BK and g_KCa_BK;
    vars i_KCa_BK and i_KCa_BK;
    vars m_BK and m_BK;
    vars m_BK_inf and m_BK_inf;
    vars m_BK_init and m_BK_init;
    vars h_BK_min and h_BK_min;
    vars h_BK and h_BK;
    vars h_BK_inf and h_BK_inf;
    vars h_BK_init and h_BK_init;
    vars z_BK and z_BK;
    vars z_BK_inf and z_BK_inf;
    vars z_BK_init and z_BK_init;
    vars z_BK_coeff and z_BK_coeff;
    vars V_mid_m_BK and V_mid_m_BK;
    vars V_den_m_BK and V_den_m_BK;
    vars V_mid_h_BK and V_mid_h_BK;
    vars V_den_h_BK and V_den_h_BK;
    vars tau_m_BK and tau_m_BK;
    vars tau_h_BK and tau_h_BK;
    vars tau_z_BK and tau_z_BK;
    vars i_KCa_SK and i_KCa_SK;
    vars g_KCa_SK and g_KCa_SK;
    vars g_KCa_SK_mod and g_KCa_SK_mod;
    vars m_SK and m_SK;
    vars m_SK_inf and m_SK_inf;
    vars m_SK_init and m_SK_init;
    vars tau_m_SK and tau_m_SK;
    vars Ca_mid_m_SK and Ca_mid_m_SK;
    vars p_SK and p_SK;
    vars i_M and i_M;
    vars g_M and g_M;
    vars g_M_mod and g_M_mod;
    vars w_init and w_init;
    vars w and w;
    vars w_inf and w_inf;
    vars cAMP and cAMP;
    vars tau_w and tau_w;
    vars delta_gM and delta_gM;
    vars tau_w_num and tau_w_num;
    vars V_mid_w and V_mid_w;
    vars Delta_V_mid_w and Delta_V_mid_w;
    vars V_den_w and V_den_w;
    vars tau_w_min and tau_w_min;
    vars i_leak_Na and i_leak_Na;
    vars i_leak_K and i_leak_K;
    vars g_leak_Na and g_leak_Na;
    vars g_leak_K and g_leak_K;
    vars i_NaCa and i_NaCa;
    vars k_NaCa and k_NaCa;
    vars alpha_NaCa and alpha_NaCa;
    vars gamma_NaCa and gamma_NaCa;
    vars Ksat and Ksat;
    vars KmCa and KmCa;
    vars KmNai and KmNai;
    vars i_NaK and i_NaK;
    vars k_NaK and k_NaK;
    vars Nai_mid_NaK and Nai_mid_NaK;
    vars Ko_mid_NaK and Ko_mid_NaK;
    vars Nai_power_NaK and Nai_power_NaK;
    vars j_IP3 and j_IP3;
    vars k_IP3 and k_IP3;
    vars k_leak_Ca and k_leak_Ca;
    vars m_IP3_inf and m_IP3_inf;
    vars h_IP3_init and h_IP3_init;
    vars h_IP3 and h_IP3;
    vars h_IP3_inf and h_IP3_inf;
    vars tau_hIP3 and tau_hIP3;
    vars IP3 and IP3;
    vars a_2 and a_2;
    vars d_1 and d_1;
    vars d_2 and d_2;
    vars d_3 and d_3;
    vars d_5 and d_5;
    vars Q_2 and Q_2;
    vars j_leak_Ca and j_leak_Ca;
    vars K_mf and K_mf;
    vars K_mr and K_mr;
    vars k_SERCA and k_SERCA;
    vars H_SERCA and H_SERCA;
    vars j_SERCA and j_SERCA;
    vars j_RyR and j_RyR;
    vars k_RyR and k_RyR;
    vars c_RyR_inf and c_RyR_inf;
    vars hc_RyR_inf and hc_RyR_inf;
    vars c_RyR and c_RyR;
    vars hc_RyR and hc_RyR;
    vars Cai_RyR_mid and Cai_RyR_mid;
    vars Cai_RyR_den and Cai_RyR_den;
    vars Ca_ER_RyR_mid and Ca_ER_RyR_mid;
    vars Ca_ER_RyR_den and Ca_ER_RyR_den;
    vars Ca_ER_RyR_tau_mid and Ca_ER_RyR_tau_mid;
    vars Ca_ER_RyR_tau_den and Ca_ER_RyR_tau_den;
    vars tau_c_RyR and tau_c_RyR;
    vars tau_hc_RyR and tau_hc_RyR;
    vars Cai_init and Cai_init;
    vars Cai and Cai;
    vars Ca_ER_init and Ca_ER_init;
    vars Ca_ER and Ca_ER;
    vars Cao and Cao;
    vars j_Ca_L and j_Ca_L;
    vars j_NaCa_Ca and j_NaCa_Ca;
    vars Ca_bulk and Ca_bulk;
    vars j_diffCa and j_diffCa;
    vars D_Ca and D_Ca;
    vars j_diffCa_ER and j_diffCa_ER;
    vars D_Ca_ER and D_Ca_ER;
    vars Ca_ER_pre and Ca_ER_pre;
    vars B_Cai and B_Cai;
    vars B_Ca_init and B_Ca_init;
    vars B_Ca_total and B_Ca_total;
    vars CaB_Cai and CaB_Cai;
    vars B_Ca_bulk and B_Ca_bulk;
    vars CaB_Ca_bulk and CaB_Ca_bulk;
    vars B_Ca_ER_pre and B_Ca_ER_pre;
    vars CaB_Ca_ER_pre and CaB_Ca_ER_pre;
    vars k_bind_Ca and k_bind_Ca;
    vars k_unbind_Ca and k_unbind_Ca;
    vars k_bind_Ca_ER and k_bind_Ca_ER;
    vars k_unbind_Ca_ER and k_unbind_Ca_ER;
    vars Nai_init and Nai_init;
    vars Nai and Nai;
    vars Nao and Nao;
    vars j_Na and j_Na;
    vars j_Na1_6 and j_Na1_6;
    vars j_NaCa_Na and j_NaCa_Na;
    vars j_NaK_Na and j_NaK_Na;
    vars j_leak_Na and j_leak_Na;
    vars Ki_init and Ki_init;
    vars Ki and Ki;
    vars Ko and Ko;
    vars j_Kv1_5 and j_Kv1_5;
    vars j_Kv4_2 and j_Kv4_2;
    vars j_Kv2 and j_Kv2;
    vars j_KCa_BK and j_KCa_BK;
    vars j_KCa_SK and j_KCa_SK;
    vars j_KM and j_KM;
    vars j_NaK_K and j_NaK_K;
    vars j_leak_K and j_leak_K;
  enddef;
  def map between soma_SN_module and axon_SN_module for
    vars I_out and I;
    vars V and V_in;
  enddef;
  def map between axon_SN_module and axon_SN for
    vars C and C;
    vars R and R;
    vars I and I;
    vars V_rest_approx and V_rest_approx;
    vars V and V;
    vars channel_ratio and channel_ratio;
    vars I_channels and I_channels;
  enddef;
  def map between axon_SN_module and var_SN_module for
    vars V and V;
  enddef;
  def map between var_SN_module and var_SN for
    vars R and R;
    vars F and F;
    vars T and T;
    vars N_avo and N_avo;
    vars Vol and Vol;
    vars c_ER_pre and c_ER_pre;
    vars c_ER and c_ER;
    vars c_SL and c_SL;
    vars c_bulk and c_bulk;
    vars E_Ca and E_Ca;
    vars cAMP and cAMP;
    vars i_Ca_N and i_Ca_N;
    vars g_CaN and g_CaN;
    vars c_init and c_init;
    vars c and c;
    vars hc_init and hc_init;
    vars hc and hc;
    vars c_inf and c_inf;
    vars hc_inf and hc_inf;
    vars tau_c and tau_c;
    vars tau_hc and tau_hc;
    vars tau_c_min and tau_c_min;
    vars tau_c_max and tau_c_max;
    vars V_mid_c and V_mid_c;
    vars V_den_c and V_den_c;
    vars V_mid_hc and V_mid_hc;
    vars V_den_hc and V_den_hc;
    vars Nai and Nai;
    vars Nao and Nao;
    vars i_NaCa and i_NaCa;
    vars k_NaCa and k_NaCa;
    vars alpha_NaCa and alpha_NaCa;
    vars gamma_NaCa and gamma_NaCa;
    vars Ksat and Ksat;
    vars KmCa and KmCa;
    vars KmNai and KmNai;
    vars j_IP3 and j_IP3;
    vars k_IP3 and k_IP3;
    vars k_leak_Ca and k_leak_Ca;
    vars m_IP3_inf and m_IP3_inf;
    vars h_IP3_init and h_IP3_init;
    vars h_IP3 and h_IP3;
    vars h_IP3_inf and h_IP3_inf;
    vars tau_hIP3 and tau_hIP3;
    vars IP3 and IP3;
    vars a_2 and a_2;
    vars d_1 and d_1;
    vars d_2 and d_2;
    vars d_3 and d_3;
    vars d_5 and d_5;
    vars Q_2 and Q_2;
    vars j_leak_Ca and j_leak_Ca;
    vars K_mf and K_mf;
    vars K_mr and K_mr;
    vars k_SERCA and k_SERCA;
    vars H_SERCA and H_SERCA;
    vars j_SERCA and j_SERCA;
    vars j_RyR and j_RyR;
    vars k_RyR and k_RyR;
    vars c_RyR_inf and c_RyR_inf;
    vars hc_RyR_inf and hc_RyR_inf;
    vars c_RyR and c_RyR;
    vars hc_RyR and hc_RyR;
    vars Cai_RyR_mid and Cai_RyR_mid;
    vars Cai_RyR_den and Cai_RyR_den;
    vars Ca_ER_RyR_mid and Ca_ER_RyR_mid;
    vars Ca_ER_RyR_den and Ca_ER_RyR_den;
    vars Ca_ER_RyR_tau_mid and Ca_ER_RyR_tau_mid;
    vars Ca_ER_RyR_tau_den and Ca_ER_RyR_tau_den;
    vars tau_c_RyR and tau_c_RyR;
    vars tau_hc_RyR and tau_hc_RyR;
    vars Cai_init and Cai_init;
    vars Cai and Cai;
    vars Ca_ER_init and Ca_ER_init;
    vars Ca_ER and Ca_ER;
    vars Cao and Cao;
    vars j_Ca_N and j_Ca_N;
    vars j_NaCa_Ca and j_NaCa_Ca;
    vars Ca_bulk and Ca_bulk;
    vars j_diffCa and j_diffCa;
    vars D_Ca and D_Ca;
    vars j_diffCa_ER and j_diffCa_ER;
    vars D_Ca_ER and D_Ca_ER;
    vars Ca_ER_pre and Ca_ER_pre;
    vars B_Cai and B_Cai;
    vars B_Ca_init and B_Ca_init;
    vars B_Ca_total and B_Ca_total;
    vars CaB_Cai and CaB_Cai;
    vars B_Ca_bulk and B_Ca_bulk;
    vars CaB_Ca_bulk and CaB_Ca_bulk;
    vars B_Ca_ER_pre and B_Ca_ER_pre;
    vars CaB_Ca_ER_pre and CaB_Ca_ER_pre;
    vars k_bind_Ca and k_bind_Ca;
    vars k_unbind_Ca and k_unbind_Ca;
    vars k_bind_Ca_ER and k_bind_Ca_ER;
    vars k_unbind_Ca_ER and k_unbind_Ca_ER;
    vars NE_init and NE_init;
    vars NE and NE;
    vars Cai_NE_base and Cai_NE_base;
    vars k_NE and k_NE;
    vars k_NET and k_NET;
  enddef;
enddef;
