def model CardiovascularSystem as
  def unit s2 as
    unit second {expo: 2};
  enddef;
  def unit Hz as
    unit second {expo: -1};
  enddef;
  def unit millis as
    unit second {pref: milli};
  enddef;
  def unit per_millis as
    unit millis {expo: -1};
  enddef;
  def unit mm as
    unit metre {pref: milli};
  enddef;
  def unit m2 as
    unit metre {expo: 2};
  enddef;
  def unit mm2 as
    unit metre {expo: 2, pref: milli};
  enddef;
  def unit m3 as
    unit metre {expo: 3};
  enddef;
  def unit m4 as
    unit metre {expo: 4};
  enddef;
  def unit mm3 as
    unit metre {expo: 3, pref: milli};
  enddef;
  def unit J_per_s as
    unit joule;
    unit second {expo: -1};
  enddef;
  def unit mol_per_s as
    unit mole;
    unit second {expo: -1};
  enddef;
  def unit mmol_per_s as
    unit mole {pref: milli};
    unit second {expo: -1};
  enddef;
  def unit umol_per_s as
    unit mole {pref: micro};
    unit second {expo: -1};
  enddef;
  def unit C_per_s as
    unit coulomb;
    unit second {expo: -1};
  enddef;
  def unit mC_per_s as
    unit coulomb {pref: milli};
    unit second {expo: -1};
  enddef;
  def unit uC_per_s as
    unit coulomb {pref: micro};
    unit second {expo: -1};
  enddef;
  def unit nC_per_s as
    unit coulomb {pref: nano};
    unit second {expo: -1};
  enddef;
  def unit Cm_per_millis as
    unit coulomb;
    unit metre;
    unit second {expo: -1, pref: milli};
  enddef;
  def unit m_per_s as
    unit metre;
    unit second {expo: -1};
  enddef;
  def unit mm_per_s as
    unit metre {pref: milli};
    unit second {expo: -1};
  enddef;
  def unit um_per_s as
    unit metre {pref: milli};
    unit second {expo: -1};
  enddef;
  def unit rad_per_s as
    unit radian;
    unit second {expo: -1};
  enddef;
  def unit m3_per_s as
    unit metre {expo: 3};
    unit second {expo: -1};
  enddef;
  def unit mL as
    unit litre {pref: milli};
  enddef;
  def unit per_milliL_s as
    unit litre {expo: -1, pref: milli};
    unit second {expo: -1};
  enddef;
  def unit s_per_m3 as
    unit second;
    unit metre {expo: -3};
  enddef;
  def unit s_per_milliV as
    unit second;
    unit volt {expo: -1, pref: milli};
  enddef;
  def unit s_per_millis as
    unit second;
    unit second {expo: -1, pref: milli};
  enddef;
  def unit millis_per_s as
    unit second {pref: milli};
    unit second {expo: -1};
  enddef;
  def unit mm3_per_s as
    unit metre {expo: 3, pref: milli};
    unit second {expo: -1};
  enddef;
  def unit l_per_s as
    unit litre;
    unit second {expo: -1};
  enddef;
  def unit per_ml_s as
    unit litre {expo: -1, pref: milli};
    unit second {expo: -1};
  enddef;
  def unit per_m3_s as
    unit metre {expo: -3};
    unit second {expo: -1};
  enddef;
  def unit J_per_mol as
    unit joule;
    unit mole {expo: -1};
  enddef;
  def unit J_per_kmol_K as
    unit joule;
    unit mole {expo: -1, pref: kilo};
    unit kelvin {expo: -1};
  enddef;
  def unit J_per_M as
    unit J_per_mol;
  enddef;
  def unit J_per_C as
    unit joule;
    unit coulomb {expo: -1};
  enddef;
  def unit J_per_C_s as
    unit joule;
    unit coulomb {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit J_per_m as
    unit joule;
    unit metre {expo: -1};
  enddef;
  def unit J_per_m3 as
    unit joule;
    unit metre {expo: -3};
  enddef;
  def unit mmHg as
    unit pascal {mult: 133.32};
  enddef;
  def unit per_mmHg as
    unit mmHg {expo: -1};
  enddef;
  def unit mmHg2 as
    unit mmHg {expo: 2};
  enddef;
  def unit Pa_per_mmHg as
    unit pascal;
    unit mmHg {expo: -1};
  enddef;
  def unit m3_per_J as
    unit joule {expo: -1};
    unit metre {expo: 3};
  enddef;
  def unit J_per_m3s as
    unit joule;
    unit metre {expo: -3};
    unit second {expo: -1};
  enddef;
  def unit m3_per_Js as
    unit joule {expo: -1};
    unit metre {expo: 3};
    unit second {expo: -1};
  enddef;
  def unit J2_per_m6 as
    unit joule {expo: 2};
    unit metre {expo: -6};
  enddef;
  def unit Js2_per_C2 as
    unit second {expo: 2};
    unit joule;
    unit coulomb {expo: -2};
  enddef;
  def unit Js2_per_mol2 as
    unit joule;
    unit second {expo: 2};
    unit mole {expo: -2};
  enddef;
  def unit Js_per_mol2 as
    unit joule;
    unit second;
    unit mole {expo: -2};
  enddef;
  def unit Js_per_C2 as
    unit joule;
    unit second;
    unit coulomb {expo: -2};
  enddef;
  def unit J_per_mol2 as
    unit joule;
    unit mole {expo: -2};
  enddef;
  def unit C2_per_J_s as
    unit coulomb {expo: 2};
    unit joule {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit J_per_C2 as
    unit joule;
    unit coulomb {expo: -2};
  enddef;
  def unit C2_per_J as
    unit joule;
    unit coulomb {expo: -2};
  enddef;
  def unit mol_per_m3 as
    unit mole;
    unit metre {expo: -3};
  enddef;
  def unit M as
    unit mole;
    unit litre {expo: -1};
  enddef;
  def unit mM as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit milliM as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit uM as
    unit mole {pref: micro};
    unit litre {expo: -1};
  enddef;
  def unit kg_per_m3 as
    unit kilogram;
    unit metre {expo: -3};
  enddef;
  def unit m3_per_kg as
    unit kilogram {expo: -1};
    unit metre {expo: 3};
  enddef;
  def unit per_m3 as
    unit metre {expo: -3};
  enddef;
  def unit mol_per_m2_s as
    unit mole;
    unit metre {expo: -2};
    unit second {expo: -1};
  enddef;
  def unit mM_m_per_s as
    unit mM;
    unit metre;
    unit second {expo: -1};
  enddef;
  def unit J_per_m2_s as
    unit joule;
    unit metre {expo: -2};
    unit second {expo: -1};
  enddef;
  def unit Js_per_m4 as
    unit joule;
    unit second;
    unit metre {expo: -4};
  enddef;
  def unit mM_per_s as
    unit mM;
    unit second {expo: -1};
  enddef;
  def unit per_s as
    unit second {expo: -1};
  enddef;
  def unit per_s2 as
    unit second {expo: -2};
  enddef;
  def unit per_mM_s as
    unit mM {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit m6_per_mol2_s as
    unit metre {expo: 6};
    unit mole {expo: -2};
    unit second {expo: -1};
  enddef;
  def unit m3_per_mol as
    unit metre {expo: 3};
    unit mole {expo: -1};
  enddef;
  def unit mol_per_m3_s as
    unit mole;
    unit metre {expo: -3};
    unit second {expo: -1};
  enddef;
  def unit per_mol as
    unit mole {expo: -1};
  enddef;
  def unit J_per_mol_K as
    unit joule;
    unit mole {expo: -1};
    unit kelvin {expo: -1};
  enddef;
  def unit m2_per_s as
    unit metre {expo: 2};
    unit second {expo: -1};
  enddef;
  def unit per_C as
    unit coulomb {expo: -1};
  enddef;
  def unit per_m as
    unit metre {expo: -1};
  enddef;
  def unit per_mM as
    unit mM {expo: -1};
  enddef;
  def unit Js2_per_m2 as
    unit joule;
    unit second {expo: 2};
    unit metre {expo: -2};
  enddef;
  def unit Js_per_m2 as
    unit joule;
    unit second;
    unit metre {expo: -2};
  enddef;
  def unit J_per_m2 as
    unit joule;
    unit metre {expo: -2};
  enddef;
  def unit m_per_s2 as
    unit metre;
    unit second {expo: -2};
  enddef;
  def unit rad_per_s2 as
    unit radian;
    unit second {expo: -2};
  enddef;
  def unit Js_per_m3 as
    unit joule;
    unit second;
    unit metre {expo: -3};
  enddef;
  def unit Js2_per_m5 as
    unit joule;
    unit second {expo: 2};
    unit metre {expo: -5};
  enddef;
  def unit m5_per_Js2 as
    unit joule {expo: -1};
    unit second {expo: -2};
    unit metre {expo: 5};
  enddef;
  def unit J_per_m6 as
    unit joule;
    unit metre {expo: -6};
  enddef;
  def unit m6_per_J as
    unit metre {expo: 6};
    unit joule {expo: -1};
  enddef;
  def unit m6_per_Js as
    unit metre {expo: 6};
    unit joule {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit mm6_per_J as
    unit metre {expo: 6, pref: milli};
    unit joule {expo: -1};
  enddef;
  def unit Js2_per_m9 as
    unit joule;
    unit second {expo: 2};
    unit metre {expo: -9};
  enddef;
  def unit m6s_per_J as
    unit second;
    unit metre {expo: 6};
    unit joule {expo: -1};
  enddef;
  def unit Js_per_m6 as
    unit joule;
    unit second;
    unit metre {expo: -6};
  enddef;
  def unit Js2_per_m6 as
    unit joule;
    unit second {expo: 2};
    unit metre {expo: -6};
  enddef;
  def unit m3_per_s2 as
    unit metre {expo: 3};
    unit second {expo: -2};
  enddef;
  def unit mm3_per_s2 as
    unit metre {expo: 3, pref: milli};
    unit second {expo: -2};
  enddef;
  def unit per_mm3 as
    unit metre {expo: -3, pref: milli};
  enddef;
  def unit UnitValve as
    unit metre {expo: 3};
    unit second {expo: -1};
    unit J_per_m3 {expo: -0.5};
  enddef;
  def unit J_per_m9 as
    unit joule;
    unit metre {expo: -9};
  enddef;
  def unit milliV as
    unit volt {pref: milli};
  enddef;
  def unit per_milliV as
    unit milliV {expo: -1};
  enddef;
  def unit millis_per_milliV as
    unit milliV {expo: -1};
    unit millis;
  enddef;
  def unit per_V as
    unit volt {expo: -1};
  enddef;
  def unit milliV_per_V as
    unit milliV;
    unit volt {expo: -1};
  enddef;
  def unit V_per_milliV as
    unit volt;
    unit milliV {expo: -1};
  enddef;
  def unit V_per_s as
    unit volt;
    unit second {expo: -1};
  enddef;
  def unit milliV_per_kiloV as
    unit volt {pref: milli};
    unit volt {expo: -1, pref: kilo};
  enddef;
  def unit V2 as
    unit volt {expo: 2};
  enddef;
  def unit milliV2 as
    unit volt {expo: 2, pref: milli};
  enddef;
  def unit millimol as
    unit mole {pref: milli};
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit per_millimolar as
    unit millimolar {expo: -1};
  enddef;
  def unit per_millimolar_s as
    unit millimolar {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit per_millimolar2_s as
    unit millimolar {expo: -2};
    unit second {expo: -1};
  enddef;
  def unit millimolar_per_s as
    unit millimolar;
    unit second {expo: -1};
  enddef;
  def unit millimolar_per_megamolar as
    unit millimolar;
    unit mole {expo: -1, pref: mega};
    unit litre;
  enddef;
  def unit per_millimol_milliS as
    unit mole {expo: -1, pref: milli};
    unit siemens {expo: -1, pref: milli};
  enddef;
  def unit per_millimol_millis as
    unit mole {expo: -1, pref: milli};
    unit second {expo: -1, pref: milli};
  enddef;
  def unit per_millimol_s as
    unit mole {expo: -1, pref: milli};
    unit second {expo: -1};
  enddef;
  def unit microm as
    unit metre {pref: micro};
  enddef;
  def unit microS as
    unit siemens {pref: micro};
  enddef;
  def unit microm3 as
    unit microm {expo: 3};
  enddef;
  def unit m3_per_microm3 as
    unit m3;
    unit microm3 {expo: -1};
  enddef;
  def unit picoF as
    unit farad {pref: pico};
  enddef;
  def unit S_per_F as
    unit siemens;
    unit farad {expo: -1};
  enddef;
  def unit m3_per_Fs as
    unit metre {expo: 3};
    unit farad {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit A_per_F as
    unit ampere;
    unit farad {expo: -1};
  enddef;
  def unit megaOhm as
    unit ohm {pref: mega};
  enddef;
  def unit nanoA as
    unit ampere {pref: nano};
  enddef;
  def unit nanoA_per_milliA as
    unit ampere {pref: nano};
    unit ampere {expo: -1, pref: milli};
  enddef;
  def unit nanoA_per_A as
    unit ampere {pref: nano};
    unit ampere {expo: -1};
  enddef;
  def unit A_per_nanoA as
    unit ampere {expo: -1, pref: nano};
    unit ampere;
  enddef;
  def unit C_per_mol as
    unit coulomb;
    unit mole {expo: -1};
  enddef;
  def unit m3_per_J_millis as
    unit metre {expo: 3};
    unit joule {expo: -1};
    unit second {expo: -1, pref: milli};
  enddef;
  def unit m3_per_mol_millis as
    unit metre {expo: 3};
    unit mole {expo: -1};
    unit second {expo: -1, pref: milli};
  enddef;
  def unit m3_per_millimol_s as
    unit metre {expo: 3};
    unit second {expo: -1};
    unit mole {expo: -1, pref: milli};
  enddef;
  def unit millimol_per_m3 as
    unit metre {expo: -3};
    unit mole {pref: milli};
  enddef;
  def unit Hz2 as
    unit second {expo: -2};
  enddef;
  def unit cm as
    unit metre {pref: centi};
  enddef;
  def unit J_per_m4_s as
    unit metre {expo: -4};
    unit joule;
    unit second {expo: -1};
  enddef;
  def unit m3_per_mol_per_sec as
    unit metre {expo: 3};
    unit mole {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit mol_per_m3_per_kPa as
    unit mole;
    unit metre {expo: -3};
    unit pascal {expo: -1, pref: kilo};
  enddef;
  def unit mol_per_m3_per_Pa as
    unit mole;
    unit metre {expo: -3};
    unit pascal {expo: -1};
  enddef;
  def unit m3_per_mol_per_s as
    unit metre {expo: 3};
    unit mole {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit mol_per_m3_per_s as
    unit mole;
    unit metre {expo: -3};
    unit second {expo: -1};
  enddef;
  def unit dim as
    unit dimensionless;
  enddef;
  def unit fmol as
    unit mole {pref: femto};
  enddef;
  def unit per_fmol as
    unit fmol {expo: -1};
  enddef;
  def unit nJ_per_s as
    unit joule {pref: nano};
    unit second {expo: -1};
  enddef;
  def unit fmol_per_s as
    unit fmol;
    unit second {expo: -1};
  enddef;
  def unit nC_per_fmol as
    unit coulomb {pref: nano};
    unit fmol {expo: -1};
  enddef;
  def unit nC as
    unit coulomb {pref: nano};
  enddef;
  def unit nJ_per_fmol as
    unit joule {pref: nano};
    unit fmol {expo: -1};
  enddef;
  def unit nJ_per_nC as
    unit joule {pref: nano};
    unit nC {expo: -1};
  enddef;
  def unit fC as
    unit coulomb {pref: femto};
  enddef;
  def unit fF as
    unit farad {pref: femto};
  enddef;
  def unit volt_per_sec as
    unit second {expo: -1};
    unit volt;
  enddef;
  def unit J_per_K_per_mol as
    unit joule;
    unit kelvin {expo: -1};
    unit mole {expo: -1};
  enddef;
  def unit nS as
    unit siemens {pref: nano};
  enddef;
  def unit nSmV as
    unit nS;
    unit mV;
  enddef;
  def unit per_ms as
    unit second {expo: -1, pref: milli};
  enddef;
  def unit mM4 as
    unit mM {expo: 4};
  enddef;
  def unit mM_per_ms as
    unit mM;
    unit ms {expo: -1};
  enddef;
  def unit mMms as
    unit mM;
    unit ms;
  enddef;
  def unit per_mMms as
    unit mMms {expo: -1};
  enddef;
  def unit molar as
    unit mole;
    unit litre {expo: -1};
  enddef;
  def unit micromolar as
    unit mole {pref: micro};
    unit litre {expo: -1};
  enddef;
  def unit nanomolar as
    unit mole {pref: nano};
    unit litre {expo: -1};
  enddef;
  def unit ms as
    unit second {pref: milli};
  enddef;
  def unit m_cubed as
    unit metre {pref: kilo};
  enddef;
  def unit mV as
    unit volt {pref: milli};
  enddef;
  def unit m_cubed_per_second as
    unit m_cubed;
    unit per_s;
  enddef;
  def unit micromolar_m_cubed as
    unit micromolar;
    unit m_cubed;
  enddef;
  def unit C as
    unit ampere;
    unit second;
  enddef;
  def unit C_per_millimol as
    unit C;
    unit mole {expo: -1, pref: milli};
  enddef;
  def unit picoA as
    unit ampere {pref: pico};
  enddef;
  def unit picoA_per_nanoA as
    unit ampere {pref: pico};
    unit ampere {expo: -1, pref: nano};
  enddef;
  def unit picoA_per_picoFarad as
    unit picoA;
    unit picoFarad {expo: -1};
  enddef;
  def unit microL as
    unit litre {pref: micro};
  enddef;
  def unit picoFarad as
    unit farad {pref: pico};
  enddef;
  def unit cm3_per_second as
    unit metre {expo: 3, pref: centi};
    unit second {expo: -1};
  enddef;
  def unit um3_per_second as
    unit metre {expo: 3, pref: micro};
    unit second {expo: -1};
  enddef;
  def unit m3mM as
    unit metre {expo: 3};
    unit mM;
  enddef;
  def unit ms2 as
    unit ms {expo: 2};
  enddef;
  def unit nM3_per_ps as
    unit metre {expo: 3, pref: nano};
    unit second {expo: -1, pref: pico};
  enddef;
  def unit per_s_squared_m_cubed as
    unit second {expo: -2};
    unit metre {expo: -3};
  enddef;
  def unit per_meters_cubed as
    unit metre {expo: -3};
  enddef;
  def unit umeter3 as
    unit metre {expo: 3, pref: micro};
  enddef;
  def unit mill1 as
    unit volt {expo: -1};
    unit volt {pref: milli};
  enddef;
  def unit picoV as
    unit volt {pref: pico};
  enddef;
  def unit pic0 as
    unit volt {expo: -1};
    unit picoV;
  enddef;
  def unit nanoV as
    unit volt {pref: nano};
  enddef;
  def unit nan0 as
    unit volt {expo: -1};
    unit nanoV;
  enddef;
  def unit kPa as
    unit pascal {pref: kilo};
  enddef;
  def unit L_per_s as
    unit metre {expo: 3, pref: deci};
    unit second {expo: -1};
  enddef;
  def unit L_per_s_per_kPa as
    unit metre {expo: 3, pref: deci};
    unit second {expo: -1};
    unit pascal {expo: -1, pref: kilo};
  enddef;
  def unit kPa_per_L as
    unit pascal {pref: kilo};
    unit metre {expo: -3, pref: deci};
  enddef;
  def unit L_per_kPa as
    unit metre {expo: 3, pref: deci};
    unit pascal {expo: -1, pref: kilo};
  enddef;
  def unit kPa_s_per_L as
    unit pascal {pref: kilo};
    unit second;
    unit metre {expo: -3, pref: deci};
  enddef;
  def unit mol_per_L as
    unit mole;
    unit litre {expo: -1};
  enddef;
  def unit L_per_mol as
    unit litre;
    unit mole {expo: -1};
  enddef;
  def unit minute as
    unit second {mult: 60};
  enddef;
  def unit umol as
    unit mole {pref: micro};
  enddef;
  def unit per_umol as
    unit umol {expo: -1};
  enddef;
  def unit umol_per_minute as
    unit umol;
    unit minute {expo: -1};
  enddef;
  def unit J_per_umol as
    unit joule;
    unit umol {expo: -1};
  enddef;
  def unit per_minute as
    unit minute {expo: -1};
  enddef;
  def unit per_minute_umol as
    unit minute {expo: -1};
    unit umol {expo: -1};
  enddef;
  def unit umolar as
    unit mole {pref: micro};
    unit litre {expo: -1};
  enddef;
  def unit per_umolar as
    unit umolar {expo: -1};
  enddef;
  def unit umolar_per_minute as
    unit umolar;
    unit minute {expo: -1};
  enddef;
  def unit J_per_umolar as
    unit joule;
    unit umolar {expo: -1};
  enddef;
  def unit per_minute_umolar as
    unit minute {expo: -1};
    unit umolar {expo: -1};
  enddef;
  def unit L_per_m3 as
    unit litre;
    unit metre {expo: -3};
  enddef;
  def unit pH as
    unit dimensionless;
  enddef;
  def unit Celsius as
    unit kelvin;
  enddef;
  def unit Celsius_1 as
    unit Celsius {expo: -1};
  enddef;
  def unit Celsius_2 as
    unit Celsius {expo: -2};
  enddef;

  def comp parameters as
    var R_pvn: Js_per_m6 {init: 1333000, interface: public};
    var C_pvn: m6_per_J {init: 0.0000000060015, interface: public};
    var I_pvn: Js2_per_m6 {init: 0.01, interface: public};
    var q_C_init_pvn: m3 {init: 0.0001, interface: public};
    var q_us_0_pvn: m3 {init: 0, interface: public};
    var Delta_q_us_pvn: dimensionless {init: 0, interface: public};
    var u_ext_pvn: J_per_m3 {init: 0, interface: public};
    var Delta_C_pvn: dimensionless {init: 0, interface: public};
    var q_0_par: m3 {init: 0, interface: public};
    var R_par: Js_per_m6 {init: 10664000, interface: public};
    var C_par: m6_per_J {init: 3.09077E-10, interface: public};
    var I_par: Js2_per_m6 {init: 0.000001, interface: public};
    var u_0_par: J_per_m3 {init: 1463, interface: public};
    var u_ext_par: J_per_m3 {init: 0, interface: public};
    var q_0_aortic_root: m3 {init: 0.00000694, interface: public};
    var R_aortic_root: Js_per_m6 {init: 1000000, interface: public};
    var C_aortic_root: m6_per_J {init: 0.000000012028, interface: public};
    var I_aortic_root: Js2_per_m6 {init: 10000, interface: public};
    var u_0_aortic_root: J_per_m3 {init: 13300, interface: public};
    var u_ext_aortic_root: J_per_m3 {init: 0, interface: public};
    var R_T_systemic_T: Js_per_m6 {init: 110000000, interface: public};
    var C_T_systemic_T: m6_per_J {init: 0.0000001, interface: public};
    var I_T_systemic_T: Js2_per_m6 {init: 0.1, interface: public};
    var q_us_systemic_T: m3 {init: 0.00245, interface: public};
    var q_init_systemic_T: m3 {init: 0.00245, interface: public};
    var u_ext_systemic_T: J_per_m3 {init: 0, interface: public};
    var R_venous_svc: Js_per_m6 {init: 1114600, interface: public};
    var C_venous_svc: m6_per_J {init: 0.000001, interface: public};
    var I_venous_svc: Js2_per_m6 {init: 0.01, interface: public};
    var q_C_init_venous_svc: m3 {init: 0.0013, interface: public};
    var q_us_0_venous_svc: m3 {init: 0, interface: public};
    var Delta_q_us_venous_svc: dimensionless {init: 0, interface: public};
    var u_ext_venous_svc: J_per_m3 {init: 0, interface: public};
    var Delta_C_venous_svc: dimensionless {init: 0, interface: public};
  enddef;

  def comp parameters_global as
    var rho: kg_per_m3 {init: 1050, interface: public};
    var T: second {init: 1, interface: public};
    var q_ra_us: m3 {init: 0.000004, interface: public};
    var q_rv_us: m3 {init: 0.00001, interface: public};
    var q_la_us: m3 {init: 0.000004, interface: public};
    var q_lv_us: m3 {init: 0.000005, interface: public};
    var q_ra_init: m3 {init: 0.000004, interface: public};
    var q_rv_init: m3 {init: 0.00001, interface: public};
    var q_la_init: m3 {init: 0.000004, interface: public};
    var q_lv_init: m3 {init: 0.002, interface: public};
    var T_ac: second {init: 0.17, interface: public};
    var T_ar: second {init: 0.17, interface: public};
    var t_astart: second {init: 0.8, interface: public};
    var T_vc: second {init: 0.3, interface: public};
    var T_vr: second {init: 0.15, interface: public};
    var t_vstart: second {init: 0, interface: public};
    var E_ra_A: J_per_m6 {init: 7998000, interface: public};
    var E_ra_B: J_per_m6 {init: 9331000, interface: public};
    var E_rv_A: J_per_m6 {init: 73315000, interface: public};
    var E_rv_B: J_per_m6 {init: 6665000, interface: public};
    var E_la_A: J_per_m6 {init: 9331000, interface: public};
    var E_la_B: J_per_m6 {init: 11997000, interface: public};
    var E_lv_A: J_per_m6 {init: 366575000, interface: public};
    var E_lv_B: J_per_m6 {init: 10664000, interface: public};
    var K_vo_trv: m3_per_Js {init: 0.3, interface: public};
    var K_vo_puv: m3_per_Js {init: 0.2, interface: public};
    var K_vo_miv: m3_per_Js {init: 0.3, interface: public};
    var K_vo_aov: m3_per_Js {init: 0.04, interface: public};
    var K_vc_trv: m3_per_Js {init: 0.4, interface: public};
    var K_vc_puv: m3_per_Js {init: 0.2, interface: public};
    var K_vc_miv: m3_per_Js {init: 0.4, interface: public};
    var K_vc_aov: m3_per_Js {init: 0.04, interface: public};
    var M_rg_trv: dimensionless {init: 0, interface: public};
    var M_rg_puv: dimensionless {init: 0, interface: public};
    var M_rg_miv: dimensionless {init: 0, interface: public};
    var M_rg_aov: dimensionless {init: 0, interface: public};
    var M_st_trv: dimensionless {init: 1, interface: public};
    var M_st_puv: dimensionless {init: 1, interface: public};
    var M_st_miv: dimensionless {init: 1, interface: public};
    var M_st_aov: dimensionless {init: 1, interface: public};
    var l_eff: metre {init: 0.01, interface: public};
    var A_nn_trv: m2 {init: 0.0009, interface: public};
    var A_nn_puv: m2 {init: 0.0004, interface: public};
    var A_nn_miv: m2 {init: 0.0006, interface: public};
    var A_nn_aov: m2 {init: 0.000314, interface: public};
  enddef;

  def comp environment as
    var time: second {interface: public};
  enddef;

  def comp pvn_module as
    var t: second {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v_in: m3_per_s {interface: public};
    var u: J_per_m3 {interface: public};
    var q_C_init: m3 {interface: public};
    var q_C_change: m3 {init: q_C_init, interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_us_0: m3 {interface: public};
    var q_us_wCont: m3 {interface: public};
    var Delta_q_us: dimensionless {interface: public};
    var Delta_C: dimensionless {interface: public};
    var C_wCont: m6_per_J {interface: public};
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u-u_out-R*v)/I;
    ode(q_C_change, t) = v_in-v;
    // TODO CHECK THAT CHANGING US VOLUME LIKE THIS CONSERVES VOLUME!!!!
    q_C = q_C_change+q_us_0-q_us_wCont;
    q = q_C+q_us_wCont;
    u_C = q_C/C_wCont;
    u = u_C+u_ext+R_v*(v_in-v);
    q_us_wCont = q_us_0*(1{dimensionless}-Delta_q_us);
    C_wCont = C*(1{dimensionless}-Delta_C);
  enddef;

  def comp par_module as
    var t: second {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var q_0: m3 {interface: public};
    var u_0: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v_in: m3_per_s {interface: public};
    var u: J_per_m3 {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var u_C: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q: m3 {interface: public};
    q = q_C+q_0;
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u-u_out-R*v)/I;
    ode(q_C, t) = v_in-v;
    u_C = q_C/C;
    u = u_0+u_C+u_ext+R_v*(v_in-v);
  enddef;

  def comp heart_module as
    var t: second {interface: public};
    var s: dimensionless {init: 0.0, interface: public};
    var mt: dimensionless {interface: public};
    var e_a: dimensionless {interface: public};
    var e_v: dimensionless {interface: public};
    var T: second {interface: public};
    var T_ac: second {interface: public};
    var T_ar: second {interface: public};
    var t_astart: second {interface: public};
    var t_astart_norm: dimensionless {interface: public};
    var T_vc: second {interface: public};
    var T_vr: second {interface: public};
    var t_vstart: second {interface: public};
    var t_vstart_norm: dimensionless {interface: public};
    var E_lv_A: J_per_m6 {interface: public};
    var E_lv_B: J_per_m6 {interface: public};
    var E_la_A: J_per_m6 {interface: public};
    var E_la_B: J_per_m6 {interface: public};
    var E_rv_A: J_per_m6 {interface: public};
    var E_rv_B: J_per_m6 {interface: public};
    var E_ra_A: J_per_m6 {interface: public};
    var E_ra_B: J_per_m6 {interface: public};
    var q_ra_us: m3 {interface: public};
    var q_rv_us: m3 {interface: public};
    var q_la_us: m3 {interface: public};
    var q_lv_us: m3 {interface: public};
    var q_ra_init: m3 {interface: public};
    var q_rv_init: m3 {interface: public};
    var q_la_init: m3 {interface: public};
    var q_lv_init: m3 {interface: public};
    var u_ra: J_per_m3 {interface: public};
    var u_rv: J_per_m3 {interface: public};
    var u_la: J_per_m3 {interface: public};
    var u_lv: J_per_m3 {interface: public};
    var u_root: J_per_m3 {interface: public};
    var u_par: J_per_m3 {interface: public};
    var v_trv: m3_per_s {init: 0, interface: public};
    var v_puv: m3_per_s {init: 0, interface: public};
    var v_miv: m3_per_s {init: 0, interface: public};
    var v_aov: m3_per_s {init: 0, interface: public};
    var v_svc: m3_per_s {interface: public};
    var v_ivc: m3_per_s {interface: public};
    var v_pvn: m3_per_s {interface: public};
    var L_trv: Js2_per_m6;
    var L_puv: Js2_per_m6;
    var L_miv: Js2_per_m6;
    var L_aov: Js2_per_m6;
    var A_eff_trv: m2 {interface: public};
    var A_eff_puv: m2 {interface: public};
    var A_eff_miv: m2 {interface: public};
    var A_eff_aov: m2 {interface: public};
    var A_nn_trv: m2 {interface: public};
    var A_nn_puv: m2 {interface: public};
    var A_nn_miv: m2 {interface: public};
    var A_nn_aov: m2 {interface: public};
    var l_eff: metre {interface: public};
    var K_vo_trv: m3_per_Js {interface: public};
    var K_vo_puv: m3_per_Js {interface: public};
    var K_vo_miv: m3_per_Js {interface: public};
    var K_vo_aov: m3_per_Js {interface: public};
    var K_vc_trv: m3_per_Js {interface: public};
    var K_vc_puv: m3_per_Js {interface: public};
    var K_vc_miv: m3_per_Js {interface: public};
    var K_vc_aov: m3_per_Js {interface: public};
    var M_rg_trv: dimensionless {interface: public};
    var M_rg_puv: dimensionless {interface: public};
    var M_rg_miv: dimensionless {interface: public};
    var M_rg_aov: dimensionless {interface: public};
    var M_st_trv: dimensionless {interface: public};
    var M_st_puv: dimensionless {interface: public};
    var M_st_miv: dimensionless {interface: public};
    var M_st_aov: dimensionless {interface: public};
    var rho: kg_per_m3 {interface: public};
    var B_trv: Js2_per_m9 {interface: public};
    var B_puv: Js2_per_m9 {interface: public};
    var B_miv: Js2_per_m9 {interface: public};
    var B_aov: Js2_per_m9 {interface: public};
    var zeta_trv: dimensionless {interface: public};
    var zeta_puv: dimensionless {interface: public};
    var zeta_miv: dimensionless {interface: public};
    var zeta_aov: dimensionless {interface: public};
    var zeta_trv_pre: dimensionless {init: 0, interface: public};
    var zeta_puv_pre: dimensionless {init: 0, interface: public};
    var zeta_miv_pre: dimensionless {init: 0, interface: public};
    var zeta_aov_pre: dimensionless {init: 0, interface: public};
    var eps_m4: m4 {init: 1e-14};
    var eps_m2: m2 {init: 1e-14};
    var eps_1: dimensionless {init: 0.07};
    var eps_2: dimensionless {init: 0.02};
    var q_lv: m3 {init: q_lv_init, interface: public};
    var q_rv: m3 {init: q_rv_init, interface: public};
    var q_la: m3 {init: q_la_init, interface: public};
    var q_ra: m3 {init: q_ra_init, interface: public};
    var chi_a: dimensionless {init: 0.0, interface: public};
    var chi_afloor: dimensionless {interface: public};
    var chi_afloor_final: dimensionless;
    var chi_v: dimensionless {init: 0.0};
    var chi_vfloor: dimensionless;
    var chi_vfloor_final: dimensionless;
    var q_heart: m3 {interface: public};
    chi_afloor = chi_a-floor(chi_a);
    ode(chi_a, t) = sel
      case (mt >= t_astart_norm) and (mt <= t_astart_norm+eps_1) and (chi_afloor <= 0.25{dimensionless}):
        0.25{dimensionless}/T_ac;
      case (t_astart_norm+eps_1 > 1.0{dimensionless}) and (mt <= t_astart_norm+eps_1-1.0{dimensionless}) and (chi_afloor <= 0.25{dimensionless}):
        0.25{dimensionless}/T_ac;
      case (chi_afloor > eps_2) and (chi_afloor <= 0.25{dimensionless}):
        0.25{dimensionless}/T_ac;
      case (chi_afloor >= 0.25{dimensionless}) and (chi_afloor < 0.5{dimensionless}):
        0.25{dimensionless}/T_ar;
      case chi_afloor >= 0.5{dimensionless}:
        0.5{dimensionless}/(T-T_ac-T_ar);
      otherwise:
        0.0{Hz};
    endsel;
    chi_afloor_final = sel
      case chi_afloor <= 0.5{dimensionless}:
        chi_afloor*2{dimensionless};
      otherwise:
        0.0{dimensionless};
    endsel;
    chi_vfloor = chi_v-floor(chi_v);
    ode(chi_v, t) = sel
      case (mt >= t_vstart_norm) and (mt <= t_vstart_norm+eps_1) and (chi_vfloor <= 0.25{dimensionless}):
        0.25{dimensionless}/T_vc;
      case (t_vstart_norm+eps_1 > 1.0{dimensionless}) and (mt <= t_vstart_norm+eps_1-1.0{dimensionless}) and (chi_vfloor <= 0.25{dimensionless}):
        0.25{dimensionless}/T_vc;
      case (chi_vfloor > eps_2) and (chi_vfloor <= 0.25{dimensionless}):
        0.25{dimensionless}/T_vc;
      case (chi_vfloor > 0.25{dimensionless}) and (chi_vfloor < 0.5{dimensionless}):
        0.25{dimensionless}/T_vr;
      case chi_vfloor > 0.5{dimensionless}:
        0.5{dimensionless}/(T-T_vc-T_vr);
      otherwise:
        0.0{Hz};
    endsel;
    chi_vfloor_final = sel
      case chi_vfloor <= 0.5{dimensionless}:
        chi_vfloor*2{dimensionless};
      otherwise:
        0.0{dimensionless};
    endsel;
    ode(s, t) = 1{dimensionless}/T;
    mt = s-floor(s);
    // Elastance Functions
    t_astart_norm = t_astart/T;
    // T_ac_norm     = T_ac/T;
    // T_ar_norm     = T_ar/T;
    t_vstart_norm = t_vstart/T;
    // T_vc_norm     = T_vc/T;
    // T_vr_norm     = T_vr/T;
    // ____________ (PETER) TO HERE ______________
    // ____________ (PETER) These are the normalised elastance functions that need to be changed to be dependent of Ca
    // When e_v equals 1 elastance equals E_lv_B (min elastance), when e_v equals 1,  elastance equals E_lv_B+E_lv_A (max elastance).
    e_a = 0.5{dimensionless}*(1{dimensionless}-cos(2{dimensionless}*pi*chi_afloor_final));
    e_v = 0.5{dimensionless}*(1{dimensionless}-cos(2{dimensionless}*pi*chi_vfloor_final));
    // Valve model
    B_trv = rho/(2{dimensionless}*sqr(A_eff_trv)+eps_m4);
    B_puv = rho/(2{dimensionless}*sqr(A_eff_puv)+eps_m4);
    B_miv = rho/(2{dimensionless}*sqr(A_eff_miv)+eps_m4);
    B_aov = rho/(2{dimensionless}*sqr(A_eff_aov)+eps_m4);
    L_trv = rho*l_eff/(A_eff_trv+eps_m2);
    L_puv = rho*l_eff/(A_eff_puv+eps_m2);
    L_miv = rho*l_eff/(A_eff_miv+eps_m2);
    L_aov = rho*l_eff/(A_eff_aov+eps_m2);
    A_eff_trv = (M_st_trv*A_nn_trv-M_rg_trv*A_nn_trv)*zeta_trv+M_rg_trv*A_nn_trv;
    A_eff_puv = (M_st_puv*A_nn_puv-M_rg_puv*A_nn_puv)*zeta_puv+M_rg_puv*A_nn_puv;
    A_eff_miv = (M_st_miv*A_nn_miv-M_rg_miv*A_nn_miv)*zeta_miv+M_rg_miv*A_nn_miv;
    A_eff_aov = (M_st_aov*A_nn_aov-M_rg_aov*A_nn_aov)*zeta_aov+M_rg_aov*A_nn_aov;
    ode(zeta_trv_pre, t) = sel
      case u_ra >= u_rv:
        (1{dimensionless}-zeta_trv_pre)*K_vo_trv*(u_ra-u_rv);
      otherwise:
        zeta_trv_pre*K_vc_trv*(u_ra-u_rv);
    endsel;
    ode(zeta_puv_pre, t) = sel
      case u_rv >= u_par:
        (1{dimensionless}-zeta_puv_pre)*K_vo_puv*(u_rv-u_par);
      otherwise:
        zeta_puv_pre*K_vc_puv*(u_rv-u_par);
    endsel;
    ode(zeta_miv_pre, t) = sel
      case u_la >= u_lv:
        (1{dimensionless}-zeta_miv_pre)*K_vo_miv*(u_la-u_lv);
      otherwise:
        zeta_miv_pre*K_vc_miv*(u_la-u_lv);
    endsel;
    ode(zeta_aov_pre, t) = sel
      case u_lv >= u_root:
        (1{dimensionless}-zeta_aov_pre)*K_vo_aov*(u_lv-u_root);
      otherwise:
        zeta_aov_pre*K_vc_aov*(u_lv-u_root);
    endsel;
    // The below ensures zeta can't be negative
    zeta_trv = max(zeta_trv_pre, 0{dimensionless});
    zeta_puv = max(zeta_puv_pre, 0{dimensionless});
    zeta_miv = max(zeta_miv_pre, 0{dimensionless});
    zeta_aov = max(zeta_aov_pre, 0{dimensionless});
    // calculate the flow through the valves
    ode(v_trv, t) = (-B_trv*v_trv*abs(v_trv)+u_ra-u_rv)/L_trv;
    ode(v_puv, t) = (-B_puv*v_puv*abs(v_puv)+u_rv-u_par)/L_puv;
    ode(v_miv, t) = (-B_miv*v_miv*abs(v_miv)+u_la-u_lv)/L_miv;
    ode(v_aov, t) = (-B_aov*v_aov*abs(v_aov)+u_lv-u_root)/L_aov;
    // Constitutive Relations
    u_ra = (e_a*E_ra_A+E_ra_B)*(q_ra-q_ra_us);
    u_rv = (e_v*E_rv_A+E_rv_B)*(q_rv-q_rv_us);
    u_la = (e_a*E_la_A+E_la_B)*(q_la-q_la_us);
    u_lv = (e_v*E_lv_A+E_lv_B)*(q_lv-q_lv_us);
    // Conservation Laws
    ode(q_ra, t) = v_svc+v_ivc-v_trv;
    ode(q_rv, t) = v_trv-v_puv;
    ode(q_la, t) = v_pvn-v_miv;
    ode(q_lv, t) = v_miv-v_aov;
    q_heart = q_ra+q_rv+q_la+q_lv;
  enddef;

  def comp aortic_root_module as
    var t: second {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var q_0: m3 {interface: public};
    var u_0: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v_in: m3_per_s {interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_d: J_per_m3 {interface: public};
    var u_C_d: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_C_d: m3 {init: 0.0, interface: public};
    var q: m3 {interface: public};
    q = q_C+q_C_d+q_0;
    // Constitutive Relations
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u-u_d-R*v)/I;
    ode(q_C, t) = v_in-v;
    u_C = q_C/(C/2{dimensionless});
    ode(q_C_d, t) = v-v_out;
    u_C_d = q_C_d/(C/2{dimensionless});
    u = u_0+u_C+u_ext+2{dimensionless}*R_v*(v_in-v);
    u_d = u_0+u_C_d+u_ext+2{dimensionless}*R_v*(v-v_out);
  enddef;

  def comp systemic_T_module as
    var t: second {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_in: J_per_m3 {interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_T: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
    var q: m3 {init: q_init, interface: public};
    R_v = 0.01{second}/C_T;
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q, t) = v-v_T;
    u_C = (q-q_us)/C_T;
    // + u_ext;
    u = u_C+u_ext+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_T/2{dimensionless})/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_T/2{dimensionless})/I_T;
  enddef;

  def comp venous_svc_module as
    var t: second {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v_in: m3_per_s {interface: public};
    var u: J_per_m3 {interface: public};
    var q_C_init: m3 {interface: public};
    var q_C_change: m3 {init: q_C_init, interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_us_0: m3 {interface: public};
    var q_us_wCont: m3 {interface: public};
    var Delta_q_us: dimensionless {interface: public};
    var Delta_C: dimensionless {interface: public};
    var C_wCont: m6_per_J {interface: public};
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u-u_out-R*v)/I;
    ode(q_C_change, t) = v_in-v;
    // TODO CHECK THAT CHANGING US VOLUME LIKE THIS CONSERVES VOLUME!!!!
    q_C = q_C_change+q_us_0-q_us_wCont;
    q = q_C+q_us_wCont;
    u_C = q_C/C_wCont;
    u = u_C+u_ext+R_v*(v_in-v);
    q_us_wCont = q_us_0*(1{dimensionless}-Delta_q_us);
    C_wCont = C*(1{dimensionless}-Delta_C);
  enddef;

  def comp volume_sum_module as
    var t: second {interface: public};
    var q: m3 {interface: public};
  enddef;

  def comp zero_flow_module as
    var t: second {interface: public};
    var v_zero: m3_per_s {interface: public};
    v_zero = 0{m3_per_s};
  enddef;

  def comp terminal_venous_connection as
    var v_systemic_T: m3_per_s {interface: public};
    var v_venous_svc: m3_per_s {interface: public};
    v_venous_svc = v_systemic_T;
  enddef;

  def comp generic_junction_connection as
  enddef;

  def comp multiport_sum_volume_sum_q as
    var q: m3 {interface: public};
    var q_pvn: m3 {interface: public};
    var q_par: m3 {interface: public};
    var q_heart_heart: m3 {interface: public};
    var q_aortic_root: m3 {interface: public};
    var q_systemic_T: m3 {interface: public};
    var q_venous_svc: m3 {interface: public};
    q = q_pvn+q_par+q_heart_heart+q_aortic_root+q_systemic_T+q_venous_svc;
  enddef;

  def comp pvn as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var R: Js_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var q_C_init: m3 {interface: public};
    var q_C_change: m3 {interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var q_us_0: m3 {interface: public};
    var q_us_wCont: m3 {interface: public};
    var Delta_q_us: dimensionless {interface: public};
    var Delta_C: dimensionless {interface: public};
  enddef;

  def comp par as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var R: Js_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var I: Js2_per_m6 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_0: J_per_m3 {interface: public};
  enddef;

  def comp heart as
    var rho: Js2_per_m5 {interface: public};
    var T: second {interface: public};
    var mt: dimensionless {interface: public};
    var u_ra: J_per_m3 {interface: public};
    var u_rv: J_per_m3 {interface: public};
    var u_la: J_per_m3 {interface: public};
    var u_lv: J_per_m3 {interface: public};
    var q_ra: m3 {interface: public};
    var q_rv: m3 {interface: public};
    var q_la: m3 {interface: public};
    var q_lv: m3 {interface: public};
    var q_ra_us: m3 {interface: public};
    var q_rv_us: m3 {interface: public};
    var q_la_us: m3 {interface: public};
    var q_lv_us: m3 {interface: public};
    var q_ra_init: m3 {interface: public};
    var q_rv_init: m3 {interface: public};
    var q_la_init: m3 {interface: public};
    var q_lv_init: m3 {interface: public};
    var T_ac: second {interface: public};
    var T_ar: second {interface: public};
    var t_astart: second {interface: public};
    var t_astart_norm: dimensionless {interface: public};
    var chi_a: dimensionless {interface: public};
    var chi_afloor: dimensionless {interface: public};
    var T_vc: second {interface: public};
    var T_vr: second {interface: public};
    var t_vstart: second {interface: public};
    var t_vstart_norm: dimensionless {interface: public};
    var E_ra_A: J_per_m6 {interface: public};
    var E_ra_B: J_per_m6 {interface: public};
    var E_rv_A: J_per_m6 {interface: public};
    var E_rv_B: J_per_m6 {interface: public};
    var E_la_A: J_per_m6 {interface: public};
    var E_la_B: J_per_m6 {interface: public};
    var E_lv_A: J_per_m6 {interface: public};
    var E_lv_B: J_per_m6 {interface: public};
    var e_a: dimensionless {interface: public};
    var e_v: dimensionless {interface: public};
    var v_trv: m3_per_s {interface: public};
    var v_puv: m3_per_s {interface: public};
    var v_miv: m3_per_s {interface: public};
    var v_aov: m3_per_s {interface: public};
    var K_vo_trv: m3_per_Js {interface: public};
    var K_vo_puv: m3_per_Js {interface: public};
    var K_vo_miv: m3_per_Js {interface: public};
    var K_vo_aov: m3_per_Js {interface: public};
    var K_vc_trv: m3_per_Js {interface: public};
    var K_vc_puv: m3_per_Js {interface: public};
    var K_vc_miv: m3_per_Js {interface: public};
    var K_vc_aov: m3_per_Js {interface: public};
    var M_rg_trv: dimensionless {interface: public};
    var M_rg_puv: dimensionless {interface: public};
    var M_rg_miv: dimensionless {interface: public};
    var M_rg_aov: dimensionless {interface: public};
    var M_st_trv: dimensionless {interface: public};
    var M_st_puv: dimensionless {interface: public};
    var M_st_miv: dimensionless {interface: public};
    var M_st_aov: dimensionless {interface: public};
    var l_eff: metre {interface: public};
    var A_nn_trv: m2 {interface: public};
    var A_nn_puv: m2 {interface: public};
    var A_nn_miv: m2 {interface: public};
    var A_nn_aov: m2 {interface: public};
    var A_eff_trv: m2 {interface: public};
    var A_eff_puv: m2 {interface: public};
    var A_eff_miv: m2 {interface: public};
    var A_eff_aov: m2 {interface: public};
    var q_heart: m3 {interface: public};
  enddef;

  def comp aortic_root as
    var u: J_per_m3 {interface: public};
    var u_d: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var u_C_d: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var q_C_d: m3 {interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var R: Js_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var u_0: J_per_m3 {interface: public};
  enddef;

  def comp systemic_T as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var v_T: m3_per_s {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
  enddef;

  def comp venous_svc as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var R: Js_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var q_C_init: m3 {interface: public};
    var q_C_change: m3 {interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var q_us_0: m3 {interface: public};
    var q_us_wCont: m3 {interface: public};
    var Delta_q_us: dimensionless {interface: public};
    var Delta_C: dimensionless {interface: public};
  enddef;

  def comp volume_sum as
  enddef;

  def comp zero_flow as
  enddef;

  def comp global as
    var rho: Js2_per_m5 {interface: public};
    var T: second {interface: public};
    var q_ra_us: m3 {interface: public};
    var q_rv_us: m3 {interface: public};
    var q_la_us: m3 {interface: public};
    var q_lv_us: m3 {interface: public};
    var q_ra_init: m3 {interface: public};
    var q_rv_init: m3 {interface: public};
    var q_la_init: m3 {interface: public};
    var q_lv_init: m3 {interface: public};
    var T_ac: second {interface: public};
    var T_ar: second {interface: public};
    var t_astart: second {interface: public};
    var T_vc: second {interface: public};
    var T_vr: second {interface: public};
    var t_vstart: second {interface: public};
    var E_ra_A: J_per_m6 {interface: public};
    var E_ra_B: J_per_m6 {interface: public};
    var E_rv_A: J_per_m6 {interface: public};
    var E_rv_B: J_per_m6 {interface: public};
    var E_la_A: J_per_m6 {interface: public};
    var E_la_B: J_per_m6 {interface: public};
    var E_lv_A: J_per_m6 {interface: public};
    var E_lv_B: J_per_m6 {interface: public};
    var K_vo_trv: m3_per_Js {interface: public};
    var K_vo_puv: m3_per_Js {interface: public};
    var K_vo_miv: m3_per_Js {interface: public};
    var K_vo_aov: m3_per_Js {interface: public};
    var K_vc_trv: m3_per_Js {interface: public};
    var K_vc_puv: m3_per_Js {interface: public};
    var K_vc_miv: m3_per_Js {interface: public};
    var K_vc_aov: m3_per_Js {interface: public};
    var M_rg_trv: dimensionless {interface: public};
    var M_rg_puv: dimensionless {interface: public};
    var M_rg_miv: dimensionless {interface: public};
    var M_rg_aov: dimensionless {interface: public};
    var M_st_trv: dimensionless {interface: public};
    var M_st_puv: dimensionless {interface: public};
    var M_st_miv: dimensionless {interface: public};
    var M_st_aov: dimensionless {interface: public};
    var l_eff: metre {interface: public};
    var A_nn_trv: m2 {interface: public};
    var A_nn_puv: m2 {interface: public};
    var A_nn_miv: m2 {interface: public};
    var A_nn_aov: m2 {interface: public};
  enddef;
  def map between parameters and pvn_module for
    vars R_pvn and R;
    vars C_pvn and C;
    vars I_pvn and I;
    vars q_C_init_pvn and q_C_init;
    vars q_us_0_pvn and q_us_0;
    vars Delta_q_us_pvn and Delta_q_us;
    vars u_ext_pvn and u_ext;
    vars Delta_C_pvn and Delta_C;
  enddef;
  def map between parameters and par_module for
    vars q_0_par and q_0;
    vars R_par and R;
    vars C_par and C;
    vars I_par and I;
    vars u_0_par and u_0;
    vars u_ext_par and u_ext;
  enddef;
  def map between parameters and aortic_root_module for
    vars q_0_aortic_root and q_0;
    vars R_aortic_root and R;
    vars C_aortic_root and C;
    vars I_aortic_root and I;
    vars u_0_aortic_root and u_0;
    vars u_ext_aortic_root and u_ext;
  enddef;
  def map between parameters and systemic_T_module for
    vars R_T_systemic_T and R_T;
    vars C_T_systemic_T and C_T;
    vars I_T_systemic_T and I_T;
    vars q_us_systemic_T and q_us;
    vars q_init_systemic_T and q_init;
    vars u_ext_systemic_T and u_ext;
  enddef;
  def map between parameters and venous_svc_module for
    vars R_venous_svc and R;
    vars C_venous_svc and C;
    vars I_venous_svc and I;
    vars q_C_init_venous_svc and q_C_init;
    vars q_us_0_venous_svc and q_us_0;
    vars Delta_q_us_venous_svc and Delta_q_us;
    vars u_ext_venous_svc and u_ext;
    vars Delta_C_venous_svc and Delta_C;
  enddef;
  def map between parameters_global and global for
    vars rho and rho;
    vars T and T;
    vars q_ra_us and q_ra_us;
    vars q_rv_us and q_rv_us;
    vars q_la_us and q_la_us;
    vars q_lv_us and q_lv_us;
    vars q_ra_init and q_ra_init;
    vars q_rv_init and q_rv_init;
    vars q_la_init and q_la_init;
    vars q_lv_init and q_lv_init;
    vars T_ac and T_ac;
    vars T_ar and T_ar;
    vars t_astart and t_astart;
    vars T_vc and T_vc;
    vars T_vr and T_vr;
    vars t_vstart and t_vstart;
    vars E_ra_A and E_ra_A;
    vars E_ra_B and E_ra_B;
    vars E_rv_A and E_rv_A;
    vars E_rv_B and E_rv_B;
    vars E_la_A and E_la_A;
    vars E_la_B and E_la_B;
    vars E_lv_A and E_lv_A;
    vars E_lv_B and E_lv_B;
    vars K_vo_trv and K_vo_trv;
    vars K_vo_puv and K_vo_puv;
    vars K_vo_miv and K_vo_miv;
    vars K_vo_aov and K_vo_aov;
    vars K_vc_trv and K_vc_trv;
    vars K_vc_puv and K_vc_puv;
    vars K_vc_miv and K_vc_miv;
    vars K_vc_aov and K_vc_aov;
    vars M_rg_trv and M_rg_trv;
    vars M_rg_puv and M_rg_puv;
    vars M_rg_miv and M_rg_miv;
    vars M_rg_aov and M_rg_aov;
    vars M_st_trv and M_st_trv;
    vars M_st_puv and M_st_puv;
    vars M_st_miv and M_st_miv;
    vars M_st_aov and M_st_aov;
    vars l_eff and l_eff;
    vars A_nn_trv and A_nn_trv;
    vars A_nn_puv and A_nn_puv;
    vars A_nn_miv and A_nn_miv;
    vars A_nn_aov and A_nn_aov;
  enddef;
  def map between parameters_global and heart_module for
    vars rho and rho;
    vars T and T;
    vars q_ra_us and q_ra_us;
    vars q_rv_us and q_rv_us;
    vars q_la_us and q_la_us;
    vars q_lv_us and q_lv_us;
    vars q_ra_init and q_ra_init;
    vars q_rv_init and q_rv_init;
    vars q_la_init and q_la_init;
    vars q_lv_init and q_lv_init;
    vars T_ac and T_ac;
    vars T_ar and T_ar;
    vars t_astart and t_astart;
    vars T_vc and T_vc;
    vars T_vr and T_vr;
    vars t_vstart and t_vstart;
    vars E_ra_A and E_ra_A;
    vars E_ra_B and E_ra_B;
    vars E_rv_A and E_rv_A;
    vars E_rv_B and E_rv_B;
    vars E_la_A and E_la_A;
    vars E_la_B and E_la_B;
    vars E_lv_A and E_lv_A;
    vars E_lv_B and E_lv_B;
    vars K_vo_trv and K_vo_trv;
    vars K_vo_puv and K_vo_puv;
    vars K_vo_miv and K_vo_miv;
    vars K_vo_aov and K_vo_aov;
    vars K_vc_trv and K_vc_trv;
    vars K_vc_puv and K_vc_puv;
    vars K_vc_miv and K_vc_miv;
    vars K_vc_aov and K_vc_aov;
    vars M_rg_trv and M_rg_trv;
    vars M_rg_puv and M_rg_puv;
    vars M_rg_miv and M_rg_miv;
    vars M_rg_aov and M_rg_aov;
    vars M_st_trv and M_st_trv;
    vars M_st_puv and M_st_puv;
    vars M_st_miv and M_st_miv;
    vars M_st_aov and M_st_aov;
    vars l_eff and l_eff;
    vars A_nn_trv and A_nn_trv;
    vars A_nn_puv and A_nn_puv;
    vars A_nn_miv and A_nn_miv;
    vars A_nn_aov and A_nn_aov;
  enddef;
  def map between environment and pvn_module for
    vars time and t;
  enddef;
  def map between environment and par_module for
    vars time and t;
  enddef;
  def map between environment and heart_module for
    vars time and t;
  enddef;
  def map between environment and aortic_root_module for
    vars time and t;
  enddef;
  def map between environment and systemic_T_module for
    vars time and t;
  enddef;
  def map between environment and venous_svc_module for
    vars time and t;
  enddef;
  def map between environment and volume_sum_module for
    vars time and t;
  enddef;
  def map between environment and zero_flow_module for
    vars time and t;
  enddef;
  def map between pvn_module and pvn for
    vars I and I;
    vars C and C;
    vars R and R;
    vars u_ext and u_ext;
    vars u and u;
    vars q_C_init and q_C_init;
    vars q_C_change and q_C_change;
    vars q_C and q_C;
    vars q and q;
    vars v and v;
    vars q_us_0 and q_us_0;
    vars q_us_wCont and q_us_wCont;
    vars Delta_q_us and Delta_q_us;
    vars Delta_C and Delta_C;
  enddef;
  def map between pvn_module and par_module for
    vars v_in and v;
    vars u and u_out;
  enddef;
  def map between pvn_module and multiport_sum_volume_sum_q for
    vars q and q_pvn;
  enddef;
  def map between pvn_module and heart_module for
    vars v and v_pvn;
    vars u_out and u_la;
  enddef;
  def map between par_module and par for
    vars I and I;
    vars C and C;
    vars R and R;
    vars q_0 and q_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars u and u;
    vars q_C and q_C;
    vars v and v;
    vars q and q;
  enddef;
  def map between par_module and heart_module for
    vars v_in and v_puv;
    vars u and u_par;
  enddef;
  def map between par_module and multiport_sum_volume_sum_q for
    vars q and q_par;
  enddef;
  def map between heart_module and heart for
    vars mt and mt;
    vars e_a and e_a;
    vars e_v and e_v;
    vars T and T;
    vars T_ac and T_ac;
    vars T_ar and T_ar;
    vars t_astart and t_astart;
    vars t_astart_norm and t_astart_norm;
    vars T_vc and T_vc;
    vars T_vr and T_vr;
    vars t_vstart and t_vstart;
    vars t_vstart_norm and t_vstart_norm;
    vars E_lv_A and E_lv_A;
    vars E_lv_B and E_lv_B;
    vars E_la_A and E_la_A;
    vars E_la_B and E_la_B;
    vars E_rv_A and E_rv_A;
    vars E_rv_B and E_rv_B;
    vars E_ra_A and E_ra_A;
    vars E_ra_B and E_ra_B;
    vars q_ra_us and q_ra_us;
    vars q_rv_us and q_rv_us;
    vars q_la_us and q_la_us;
    vars q_lv_us and q_lv_us;
    vars q_ra_init and q_ra_init;
    vars q_rv_init and q_rv_init;
    vars q_la_init and q_la_init;
    vars q_lv_init and q_lv_init;
    vars u_ra and u_ra;
    vars u_rv and u_rv;
    vars u_la and u_la;
    vars u_lv and u_lv;
    vars v_trv and v_trv;
    vars v_puv and v_puv;
    vars v_miv and v_miv;
    vars v_aov and v_aov;
    vars A_eff_trv and A_eff_trv;
    vars A_eff_puv and A_eff_puv;
    vars A_eff_miv and A_eff_miv;
    vars A_eff_aov and A_eff_aov;
    vars A_nn_trv and A_nn_trv;
    vars A_nn_puv and A_nn_puv;
    vars A_nn_miv and A_nn_miv;
    vars A_nn_aov and A_nn_aov;
    vars l_eff and l_eff;
    vars K_vo_trv and K_vo_trv;
    vars K_vo_puv and K_vo_puv;
    vars K_vo_miv and K_vo_miv;
    vars K_vo_aov and K_vo_aov;
    vars K_vc_trv and K_vc_trv;
    vars K_vc_puv and K_vc_puv;
    vars K_vc_miv and K_vc_miv;
    vars K_vc_aov and K_vc_aov;
    vars M_rg_trv and M_rg_trv;
    vars M_rg_puv and M_rg_puv;
    vars M_rg_miv and M_rg_miv;
    vars M_rg_aov and M_rg_aov;
    vars M_st_trv and M_st_trv;
    vars M_st_puv and M_st_puv;
    vars M_st_miv and M_st_miv;
    vars M_st_aov and M_st_aov;
    vars rho and rho;
    vars q_lv and q_lv;
    vars q_rv and q_rv;
    vars q_la and q_la;
    vars q_ra and q_ra;
    vars chi_a and chi_a;
    vars chi_afloor and chi_afloor;
    vars q_heart and q_heart;
  enddef;
  def map between heart_module and venous_svc_module for
    vars u_ra and u_out;
    vars v_svc and v;
  enddef;
  def map between heart_module and aortic_root_module for
    vars u_root and u;
    vars v_aov and v_in;
  enddef;
  def map between heart_module and zero_flow_module for
    vars v_ivc and v_zero;
  enddef;
  def map between heart_module and multiport_sum_volume_sum_q for
    vars q_heart and q_heart_heart;
  enddef;
  def map between aortic_root_module and aortic_root for
    vars I and I;
    vars C and C;
    vars R and R;
    vars q_0 and q_0;
    vars u_0 and u_0;
    vars u_ext and u_ext;
    vars u and u;
    vars u_C and u_C;
    vars v and v;
    vars u_d and u_d;
    vars u_C_d and u_C_d;
    vars q_C and q_C;
    vars q_C_d and q_C_d;
    vars q and q;
  enddef;
  def map between aortic_root_module and systemic_T_module for
    vars u_d and u_in;
    vars v_out and v;
  enddef;
  def map between aortic_root_module and multiport_sum_volume_sum_q for
    vars q and q_aortic_root;
  enddef;
  def map between systemic_T_module and systemic_T for
    vars I_T and I_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars v_T and v_T;
    vars q_us and q_us;
    vars q_init and q_init;
    vars q and q;
  enddef;
  def map between systemic_T_module and terminal_venous_connection for
    vars v_T and v_systemic_T;
  enddef;
  def map between systemic_T_module and venous_svc_module for
    vars u_out and u;
  enddef;
  def map between systemic_T_module and multiport_sum_volume_sum_q for
    vars q and q_systemic_T;
  enddef;
  def map between venous_svc_module and venous_svc for
    vars I and I;
    vars C and C;
    vars R and R;
    vars u_ext and u_ext;
    vars u and u;
    vars q_C_init and q_C_init;
    vars q_C_change and q_C_change;
    vars q_C and q_C;
    vars q and q;
    vars v and v;
    vars q_us_0 and q_us_0;
    vars q_us_wCont and q_us_wCont;
    vars Delta_q_us and Delta_q_us;
    vars Delta_C and Delta_C;
  enddef;
  def map between venous_svc_module and terminal_venous_connection for
    vars v_in and v_venous_svc;
  enddef;
  def map between venous_svc_module and multiport_sum_volume_sum_q for
    vars q and q_venous_svc;
  enddef;
  def map between volume_sum_module and multiport_sum_volume_sum_q for
    vars q and q;
  enddef;
enddef;
