def model CardiovascularSystem as
  def unit s2 as
    unit second {expo: 2};
  enddef;
  def unit Hz as
    unit second {expo: -1};
  enddef;
  def unit millis as
    unit second {pref: milli};
  enddef;
  def unit per_millis as
    unit millis {expo: -1};
  enddef;
  def unit mm as
    unit metre {pref: milli};
  enddef;
  def unit m2 as
    unit metre {expo: 2};
  enddef;
  def unit mm2 as
    unit metre {expo: 2, pref: milli};
  enddef;
  def unit m3 as
    unit metre {expo: 3};
  enddef;
  def unit m4 as
    unit metre {expo: 4};
  enddef;
  def unit mm3 as
    unit metre {expo: 3, pref: milli};
  enddef;
  def unit J_per_s as
    unit joule;
    unit second {expo: -1};
  enddef;
  def unit mol_per_s as
    unit mole;
    unit second {expo: -1};
  enddef;
  def unit mmol_per_s as
    unit mole {pref: milli};
    unit second {expo: -1};
  enddef;
  def unit umol_per_s as
    unit mole {pref: micro};
    unit second {expo: -1};
  enddef;
  def unit C_per_s as
    unit coulomb;
    unit second {expo: -1};
  enddef;
  def unit mC_per_s as
    unit coulomb {pref: milli};
    unit second {expo: -1};
  enddef;
  def unit uC_per_s as
    unit coulomb {pref: micro};
    unit second {expo: -1};
  enddef;
  def unit nC_per_s as
    unit coulomb {pref: nano};
    unit second {expo: -1};
  enddef;
  def unit Cm_per_millis as
    unit coulomb;
    unit metre;
    unit second {expo: -1, pref: milli};
  enddef;
  def unit m_per_s as
    unit metre;
    unit second {expo: -1};
  enddef;
  def unit mm_per_s as
    unit metre {pref: milli};
    unit second {expo: -1};
  enddef;
  def unit um_per_s as
    unit metre {pref: milli};
    unit second {expo: -1};
  enddef;
  def unit rad_per_s as
    unit radian;
    unit second {expo: -1};
  enddef;
  def unit m3_per_s as
    unit metre {expo: 3};
    unit second {expo: -1};
  enddef;
  def unit mL as
    unit litre {pref: milli};
  enddef;
  def unit per_milliL_s as
    unit litre {expo: -1, pref: milli};
    unit second {expo: -1};
  enddef;
  def unit s_per_m3 as
    unit second;
    unit metre {expo: -3};
  enddef;
  def unit s_per_milliV as
    unit second;
    unit volt {expo: -1, pref: milli};
  enddef;
  def unit s_per_millis as
    unit second;
    unit second {expo: -1, pref: milli};
  enddef;
  def unit millis_per_s as
    unit second {pref: milli};
    unit second {expo: -1};
  enddef;
  def unit mm3_per_s as
    unit metre {expo: 3, pref: milli};
    unit second {expo: -1};
  enddef;
  def unit l_per_s as
    unit litre;
    unit second {expo: -1};
  enddef;
  def unit per_ml_s as
    unit litre {expo: -1, pref: milli};
    unit second {expo: -1};
  enddef;
  def unit per_m3_s as
    unit metre {expo: -3};
    unit second {expo: -1};
  enddef;
  def unit J_per_mol as
    unit joule;
    unit mole {expo: -1};
  enddef;
  def unit J_per_kmol_K as
    unit joule;
    unit mole {expo: -1, pref: kilo};
    unit kelvin {expo: -1};
  enddef;
  def unit J_per_M as
    unit J_per_mol;
  enddef;
  def unit J_per_C as
    unit joule;
    unit coulomb {expo: -1};
  enddef;
  def unit J_per_C_s as
    unit joule;
    unit coulomb {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit J_per_m as
    unit joule;
    unit metre {expo: -1};
  enddef;
  def unit J_per_m3 as
    unit joule;
    unit metre {expo: -3};
  enddef;
  def unit mmHg as
    unit pascal {mult: 133.32};
  enddef;
  def unit per_mmHg as
    unit mmHg {expo: -1};
  enddef;
  def unit mmHg2 as
    unit mmHg {expo: 2};
  enddef;
  def unit Pa_per_mmHg as
    unit pascal;
    unit mmHg {expo: -1};
  enddef;
  def unit m3_per_J as
    unit joule {expo: -1};
    unit metre {expo: 3};
  enddef;
  def unit J_per_m3s as
    unit joule;
    unit metre {expo: -3};
    unit second {expo: -1};
  enddef;
  def unit m3_per_Js as
    unit joule {expo: -1};
    unit metre {expo: 3};
    unit second {expo: -1};
  enddef;
  def unit J2_per_m6 as
    unit joule {expo: 2};
    unit metre {expo: -6};
  enddef;
  def unit Js2_per_C2 as
    unit second {expo: 2};
    unit joule;
    unit coulomb {expo: -2};
  enddef;
  def unit Js2_per_mol2 as
    unit joule;
    unit second {expo: 2};
    unit mole {expo: -2};
  enddef;
  def unit Js_per_mol2 as
    unit joule;
    unit second;
    unit mole {expo: -2};
  enddef;
  def unit Js_per_C2 as
    unit joule;
    unit second;
    unit coulomb {expo: -2};
  enddef;
  def unit J_per_mol2 as
    unit joule;
    unit mole {expo: -2};
  enddef;
  def unit C2_per_J_s as
    unit coulomb {expo: 2};
    unit joule {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit J_per_C2 as
    unit joule;
    unit coulomb {expo: -2};
  enddef;
  def unit C2_per_J as
    unit joule;
    unit coulomb {expo: -2};
  enddef;
  def unit mol_per_m3 as
    unit mole;
    unit metre {expo: -3};
  enddef;
  def unit M as
    unit mole;
    unit litre {expo: -1};
  enddef;
  def unit mM as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit milliM as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit uM as
    unit mole {pref: micro};
    unit litre {expo: -1};
  enddef;
  def unit kg_per_m3 as
    unit kilogram;
    unit metre {expo: -3};
  enddef;
  def unit m3_per_kg as
    unit kilogram {expo: -1};
    unit metre {expo: 3};
  enddef;
  def unit per_m3 as
    unit metre {expo: -3};
  enddef;
  def unit mol_per_m2_s as
    unit mole;
    unit metre {expo: -2};
    unit second {expo: -1};
  enddef;
  def unit mM_m_per_s as
    unit mM;
    unit metre;
    unit second {expo: -1};
  enddef;
  def unit J_per_m2_s as
    unit joule;
    unit metre {expo: -2};
    unit second {expo: -1};
  enddef;
  def unit Js_per_m4 as
    unit joule;
    unit second;
    unit metre {expo: -4};
  enddef;
  def unit mM_per_s as
    unit mM;
    unit second {expo: -1};
  enddef;
  def unit per_s as
    unit second {expo: -1};
  enddef;
  def unit per_s2 as
    unit second {expo: -2};
  enddef;
  def unit per_mM_s as
    unit mM {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit m6_per_mol2_s as
    unit metre {expo: 6};
    unit mole {expo: -2};
    unit second {expo: -1};
  enddef;
  def unit m3_per_mol as
    unit metre {expo: 3};
    unit mole {expo: -1};
  enddef;
  def unit mol_per_m3_s as
    unit mole;
    unit metre {expo: -3};
    unit second {expo: -1};
  enddef;
  def unit per_mol as
    unit mole {expo: -1};
  enddef;
  def unit J_per_mol_K as
    unit joule;
    unit mole {expo: -1};
    unit kelvin {expo: -1};
  enddef;
  def unit m2_per_s as
    unit metre {expo: 2};
    unit second {expo: -1};
  enddef;
  def unit per_C as
    unit coulomb {expo: -1};
  enddef;
  def unit per_m as
    unit metre {expo: -1};
  enddef;
  def unit per_mM as
    unit mM {expo: -1};
  enddef;
  def unit Js2_per_m2 as
    unit joule;
    unit second {expo: 2};
    unit metre {expo: -2};
  enddef;
  def unit Js_per_m2 as
    unit joule;
    unit second;
    unit metre {expo: -2};
  enddef;
  def unit J_per_m2 as
    unit joule;
    unit metre {expo: -2};
  enddef;
  def unit m_per_s2 as
    unit metre;
    unit second {expo: -2};
  enddef;
  def unit rad_per_s2 as
    unit radian;
    unit second {expo: -2};
  enddef;
  def unit Js_per_m3 as
    unit joule;
    unit second;
    unit metre {expo: -3};
  enddef;
  def unit Js2_per_m5 as
    unit joule;
    unit second {expo: 2};
    unit metre {expo: -5};
  enddef;
  def unit m5_per_Js2 as
    unit joule {expo: -1};
    unit second {expo: -2};
    unit metre {expo: 5};
  enddef;
  def unit J_per_m6 as
    unit joule;
    unit metre {expo: -6};
  enddef;
  def unit m6_per_J as
    unit metre {expo: 6};
    unit joule {expo: -1};
  enddef;
  def unit m6_per_Js as
    unit metre {expo: 6};
    unit joule {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit mm6_per_J as
    unit metre {expo: 6, pref: milli};
    unit joule {expo: -1};
  enddef;
  def unit Js2_per_m9 as
    unit joule;
    unit second {expo: 2};
    unit metre {expo: -9};
  enddef;
  def unit m6s_per_J as
    unit second;
    unit metre {expo: 6};
    unit joule {expo: -1};
  enddef;
  def unit Js_per_m6 as
    unit joule;
    unit second;
    unit metre {expo: -6};
  enddef;
  def unit Js2_per_m6 as
    unit joule;
    unit second {expo: 2};
    unit metre {expo: -6};
  enddef;
  def unit m3_per_s2 as
    unit metre {expo: 3};
    unit second {expo: -2};
  enddef;
  def unit mm3_per_s2 as
    unit metre {expo: 3, pref: milli};
    unit second {expo: -2};
  enddef;
  def unit per_mm3 as
    unit metre {expo: -3, pref: milli};
  enddef;
  def unit UnitValve as
    unit metre {expo: 3};
    unit second {expo: -1};
    unit J_per_m3 {expo: -0.5};
  enddef;
  def unit J_per_m9 as
    unit joule;
    unit metre {expo: -9};
  enddef;
  def unit milliV as
    unit volt {pref: milli};
  enddef;
  def unit per_milliV as
    unit milliV {expo: -1};
  enddef;
  def unit millis_per_milliV as
    unit milliV {expo: -1};
    unit millis;
  enddef;
  def unit per_V as
    unit volt {expo: -1};
  enddef;
  def unit milliV_per_V as
    unit milliV;
    unit volt {expo: -1};
  enddef;
  def unit V_per_milliV as
    unit volt;
    unit milliV {expo: -1};
  enddef;
  def unit V_per_s as
    unit volt;
    unit second {expo: -1};
  enddef;
  def unit milliV_per_kiloV as
    unit volt {pref: milli};
    unit volt {expo: -1, pref: kilo};
  enddef;
  def unit V2 as
    unit volt {expo: 2};
  enddef;
  def unit milliV2 as
    unit volt {expo: 2, pref: milli};
  enddef;
  def unit millimol as
    unit mole {pref: milli};
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit per_millimolar as
    unit millimolar {expo: -1};
  enddef;
  def unit per_millimolar_s as
    unit millimolar {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit per_millimolar2_s as
    unit millimolar {expo: -2};
    unit second {expo: -1};
  enddef;
  def unit millimolar_per_s as
    unit millimolar;
    unit second {expo: -1};
  enddef;
  def unit millimolar_per_megamolar as
    unit millimolar;
    unit mole {expo: -1, pref: mega};
    unit litre;
  enddef;
  def unit per_millimol_milliS as
    unit mole {expo: -1, pref: milli};
    unit siemens {expo: -1, pref: milli};
  enddef;
  def unit per_millimol_millis as
    unit mole {expo: -1, pref: milli};
    unit second {expo: -1, pref: milli};
  enddef;
  def unit per_millimol_s as
    unit mole {expo: -1, pref: milli};
    unit second {expo: -1};
  enddef;
  def unit microm as
    unit metre {pref: micro};
  enddef;
  def unit microS as
    unit siemens {pref: micro};
  enddef;
  def unit microm3 as
    unit microm {expo: 3};
  enddef;
  def unit m3_per_microm3 as
    unit m3;
    unit microm3 {expo: -1};
  enddef;
  def unit picoF as
    unit farad {pref: pico};
  enddef;
  def unit S_per_F as
    unit siemens;
    unit farad {expo: -1};
  enddef;
  def unit m3_per_Fs as
    unit metre {expo: 3};
    unit farad {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit A_per_F as
    unit ampere;
    unit farad {expo: -1};
  enddef;
  def unit megaOhm as
    unit ohm {pref: mega};
  enddef;
  def unit nanoA as
    unit ampere {pref: nano};
  enddef;
  def unit nanoA_per_milliA as
    unit ampere {pref: nano};
    unit ampere {expo: -1, pref: milli};
  enddef;
  def unit nanoA_per_A as
    unit ampere {pref: nano};
    unit ampere {expo: -1};
  enddef;
  def unit A_per_nanoA as
    unit ampere {expo: -1, pref: nano};
    unit ampere;
  enddef;
  def unit C_per_mol as
    unit coulomb;
    unit mole {expo: -1};
  enddef;
  def unit m3_per_J_millis as
    unit metre {expo: 3};
    unit joule {expo: -1};
    unit second {expo: -1, pref: milli};
  enddef;
  def unit m3_per_mol_millis as
    unit metre {expo: 3};
    unit mole {expo: -1};
    unit second {expo: -1, pref: milli};
  enddef;
  def unit m3_per_millimol_s as
    unit metre {expo: 3};
    unit second {expo: -1};
    unit mole {expo: -1, pref: milli};
  enddef;
  def unit millimol_per_m3 as
    unit metre {expo: -3};
    unit mole {pref: milli};
  enddef;
  def unit Hz2 as
    unit second {expo: -2};
  enddef;
  def unit cm as
    unit metre {pref: centi};
  enddef;
  def unit J_per_m4_s as
    unit metre {expo: -4};
    unit joule;
    unit second {expo: -1};
  enddef;
  def unit m3_per_mol_per_sec as
    unit metre {expo: 3};
    unit mole {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit mol_per_m3_per_kPa as
    unit mole;
    unit metre {expo: -3};
    unit pascal {expo: -1, pref: kilo};
  enddef;
  def unit mol_per_m3_per_Pa as
    unit mole;
    unit metre {expo: -3};
    unit pascal {expo: -1};
  enddef;
  def unit m3_per_mol_per_s as
    unit metre {expo: 3};
    unit mole {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit mol_per_m3_per_s as
    unit mole;
    unit metre {expo: -3};
    unit second {expo: -1};
  enddef;
  def unit dim as
    unit dimensionless;
  enddef;
  def unit fmol as
    unit mole {pref: femto};
  enddef;
  def unit per_fmol as
    unit fmol {expo: -1};
  enddef;
  def unit nJ_per_s as
    unit joule {pref: nano};
    unit second {expo: -1};
  enddef;
  def unit fmol_per_s as
    unit fmol;
    unit second {expo: -1};
  enddef;
  def unit nC_per_fmol as
    unit coulomb {pref: nano};
    unit fmol {expo: -1};
  enddef;
  def unit nC as
    unit coulomb {pref: nano};
  enddef;
  def unit nJ_per_fmol as
    unit joule {pref: nano};
    unit fmol {expo: -1};
  enddef;
  def unit nJ_per_nC as
    unit joule {pref: nano};
    unit nC {expo: -1};
  enddef;
  def unit fC as
    unit coulomb {pref: femto};
  enddef;
  def unit fF as
    unit farad {pref: femto};
  enddef;
  def unit volt_per_sec as
    unit second {expo: -1};
    unit volt;
  enddef;
  def unit J_per_K_per_mol as
    unit joule;
    unit kelvin {expo: -1};
    unit mole {expo: -1};
  enddef;
  def unit nS as
    unit siemens {pref: nano};
  enddef;
  def unit nSmV as
    unit nS;
    unit mV;
  enddef;
  def unit per_ms as
    unit second {expo: -1, pref: milli};
  enddef;
  def unit mM4 as
    unit mM {expo: 4};
  enddef;
  def unit mM_per_ms as
    unit mM;
    unit ms {expo: -1};
  enddef;
  def unit mMms as
    unit mM;
    unit ms;
  enddef;
  def unit per_mMms as
    unit mMms {expo: -1};
  enddef;
  def unit molar as
    unit mole;
    unit litre {expo: -1};
  enddef;
  def unit micromolar as
    unit mole {pref: micro};
    unit litre {expo: -1};
  enddef;
  def unit nanomolar as
    unit mole {pref: nano};
    unit litre {expo: -1};
  enddef;
  def unit ms as
    unit second {pref: milli};
  enddef;
  def unit m_cubed as
    unit metre {pref: kilo};
  enddef;
  def unit mV as
    unit volt {pref: milli};
  enddef;
  def unit m_cubed_per_second as
    unit m_cubed;
    unit per_s;
  enddef;
  def unit micromolar_m_cubed as
    unit micromolar;
    unit m_cubed;
  enddef;
  def unit C as
    unit ampere;
    unit second;
  enddef;
  def unit C_per_millimol as
    unit C;
    unit mole {expo: -1, pref: milli};
  enddef;
  def unit picoA as
    unit ampere {pref: pico};
  enddef;
  def unit picoA_per_nanoA as
    unit ampere {pref: pico};
    unit ampere {expo: -1, pref: nano};
  enddef;
  def unit picoA_per_picoFarad as
    unit picoA;
    unit picoFarad {expo: -1};
  enddef;
  def unit microL as
    unit litre {pref: micro};
  enddef;
  def unit picoFarad as
    unit farad {pref: pico};
  enddef;
  def unit cm3_per_second as
    unit metre {expo: 3, pref: centi};
    unit second {expo: -1};
  enddef;
  def unit um3_per_second as
    unit metre {expo: 3, pref: micro};
    unit second {expo: -1};
  enddef;
  def unit m3mM as
    unit metre {expo: 3};
    unit mM;
  enddef;
  def unit ms2 as
    unit ms {expo: 2};
  enddef;
  def unit nM3_per_ps as
    unit metre {expo: 3, pref: nano};
    unit second {expo: -1, pref: pico};
  enddef;
  def unit per_s_squared_m_cubed as
    unit second {expo: -2};
    unit metre {expo: -3};
  enddef;
  def unit per_meters_cubed as
    unit metre {expo: -3};
  enddef;
  def unit umeter3 as
    unit metre {expo: 3, pref: micro};
  enddef;
  def unit mill1 as
    unit volt {expo: -1};
    unit volt {pref: milli};
  enddef;
  def unit picoV as
    unit volt {pref: pico};
  enddef;
  def unit pic0 as
    unit volt {expo: -1};
    unit picoV;
  enddef;
  def unit nanoV as
    unit volt {pref: nano};
  enddef;
  def unit nan0 as
    unit volt {expo: -1};
    unit nanoV;
  enddef;
  def unit kPa as
    unit pascal {pref: kilo};
  enddef;
  def unit L_per_s as
    unit metre {expo: 3, pref: deci};
    unit second {expo: -1};
  enddef;
  def unit L_per_s_per_kPa as
    unit metre {expo: 3, pref: deci};
    unit second {expo: -1};
    unit pascal {expo: -1, pref: kilo};
  enddef;
  def unit kPa_per_L as
    unit pascal {pref: kilo};
    unit metre {expo: -3, pref: deci};
  enddef;
  def unit L_per_kPa as
    unit metre {expo: 3, pref: deci};
    unit pascal {expo: -1, pref: kilo};
  enddef;
  def unit kPa_s_per_L as
    unit pascal {pref: kilo};
    unit second;
    unit metre {expo: -3, pref: deci};
  enddef;
  def unit mol_per_L as
    unit mole;
    unit litre {expo: -1};
  enddef;
  def unit L_per_mol as
    unit litre;
    unit mole {expo: -1};
  enddef;
  def unit minute as
    unit second {mult: 60};
  enddef;
  def unit umol as
    unit mole {pref: micro};
  enddef;
  def unit per_umol as
    unit umol {expo: -1};
  enddef;
  def unit umol_per_minute as
    unit umol;
    unit minute {expo: -1};
  enddef;
  def unit J_per_umol as
    unit joule;
    unit umol {expo: -1};
  enddef;
  def unit per_minute as
    unit minute {expo: -1};
  enddef;
  def unit per_minute_umol as
    unit minute {expo: -1};
    unit umol {expo: -1};
  enddef;
  def unit umolar as
    unit mole {pref: micro};
    unit litre {expo: -1};
  enddef;
  def unit per_umolar as
    unit umolar {expo: -1};
  enddef;
  def unit umolar_per_minute as
    unit umolar;
    unit minute {expo: -1};
  enddef;
  def unit J_per_umolar as
    unit joule;
    unit umolar {expo: -1};
  enddef;
  def unit per_minute_umolar as
    unit minute {expo: -1};
    unit umolar {expo: -1};
  enddef;
  def unit L_per_m3 as
    unit litre;
    unit metre {expo: -3};
  enddef;
  def unit pH as
    unit dimensionless;
  enddef;
  def unit Celsius as
    unit kelvin;
  enddef;
  def unit Celsius_1 as
    unit Celsius {expo: -1};
  enddef;
  def unit Celsius_2 as
    unit Celsius {expo: -2};
  enddef;

  def comp parameters as
    var tau_lung_lung_stretch: second {init: 2.0, interface: public};
    var G_al_lung_stretch: per_m3_s {init: 23.291e6, interface: public};
    var q_str_lung_stretch: m3 {init: 0.0, interface: public};
    var P_baro_init_baroreceptor: J_per_m3 {init: 39990, interface: public};
    var P_nom_baroreceptor: J_per_m3 {init: 12263.6, interface: public};
    var tau_zb_baroreceptor: second {init: 6.37, interface: public};
    var tau_pb_baroreceptor: second {init: 2.076, interface: public};
    var f_ab_min_baroreceptor: Hz {init: 2.52, interface: public};
    var f_ab_max_baroreceptor: Hz {init: 47.78, interface: public};
    var k_ab_baroreceptor: J_per_m3 {init: 1567.3414, interface: public};
    var P_sys_baroreceptor: J_per_m3 {init: 16662, interface: public};
    var dP_sys_dt_baroreceptor: J_per_m3s {init: 26.66, interface: public};
    var tau_cp_cardiopulm_receptor: second {init: 2, interface: public};
    var P_l_init_cardiopulm_receptor: J_per_m3 {init: 0.0, interface: public};
    var f_maxl_cardiopulm_receptor: Hz {init: 20, interface: public};
    var P_tn_cardiopulm_receptor: J_per_m3 {init: 1440, interface: public};
    var k_l_cardiopulm_receptor: J_per_m3 {init: 190.47809, interface: public};
    var P_pvn_cardiopulm_receptor: J_per_m3 {init: 500, interface: public};
    var P_mus_cardiopulm_receptor: J_per_m3 {init: 500, interface: public};
    var G_abh_sympathetic_afferent: dimensionless {init: 1.0, interface: public};
    var G_alh_sympathetic_afferent: dimensionless {init: 1.541, interface: public};
    var G_ach_sympathetic_afferent: dimensionless {init: 2.0, interface: public};
    var G_abp_sympathetic_afferent: dimensionless {init: 1.0, interface: public};
    var G_alp_sympathetic_afferent: dimensionless {init: 0.33, interface: public};
    var G_acp_sympathetic_afferent: dimensionless {init: 2.5, interface: public};
    var G_abv_sympathetic_afferent: dimensionless {init: 1.0, interface: public};
    var G_alv_sympathetic_afferent: dimensionless {init: 0.0, interface: public};
    var G_acv_sympathetic_afferent: dimensionless {init: 0.0, interface: public};
    var f_esinf_sympathetic_efferent: Hz {init: 2.1, interface: public};
    var f_es0_sympathetic_efferent: Hz {init: 16.11, interface: public};
    var k_es_sympathetic_efferent: second {init: 0.0675, interface: public};
    var f_min_br_NTS: Hz {init: 0.304, interface: public};
    var f_max_br_NTS: Hz {init: 21.499, interface: public};
    var f_mid_br_NTS: Hz {init: 44.125, interface: public};
    var f_min_ls_NTS: Hz {init: 2.75, interface: public};
    var f_max_ls_NTS: Hz {init: 31.569, interface: public};
    var f_mid_ls_NTS: Hz {init: 11.126, interface: public};
    var f_min_cp_NTS: Hz {init: 0.451, interface: public};
    var f_max_cp_NTS: Hz {init: 28.327, interface: public};
    var f_mid_cp_NTS: Hz {init: 10.2, interface: public};
    var f_min_ch_NTS: Hz {init: 2.2343941, interface: public};
    var f_max_ch_NTS: Hz {init: 25, interface: public};
    var f_mid_ch_NTS: Hz {init: 0.05, interface: public};
    var k_NTS_br_NTS: dimensionless {init: 21, interface: public};
    var k_NTS_ls_NTS: dimensionless {init: 2, interface: public};
    var k_NTS_cp_NTS: dimensionless {init: 7, interface: public};
    var k_NTS_ch_NTS: dimensionless {init: 1.0, interface: public};
    var f_apc_NTS: Hz {init: 3.7, interface: public};
    var f_min_DMV_DMV: Hz {init: 2.59, interface: public};
    var f_max_DMV_DMV: Hz {init: 6.66, interface: public};
    var f_mid_DMV_DMV: Hz {init: 42.91, interface: public};
    var k_DMV_DMV: dimensionless {init: 33.5, interface: public};
    var f_min_NA_NA: Hz {init: 4.88, interface: public};
    var f_max_NA_NA: Hz {init: 15.78, interface: public};
    var f_mid_NA_NA: Hz {init: 59.83, interface: public};
    var k_RSA_NA: dimensionless {init: 0.5, interface: public};
    var k_NA_NA: dimensionless {init: 23, interface: public};
    var s_floor_NA: dimensionless {init: 0.0, interface: public};
    var f_min_NActr_NActr: Hz {init: 0.61, interface: public};
    var f_max_NActr_NActr: Hz {init: 11, interface: public};
    var f_mid_NActr_NActr: Hz {init: 12.81, interface: public};
    var k_NActr_NActr: dimensionless {init: 23, interface: public};
    var f_min_LCN_LCN: Hz {init: 1.9886, interface: public};
    var f_max_LCN_LCN: Hz {init: 18.3757, interface: public};
    var f_mid_LCN_LCN: Hz {init: 521.2172, interface: public};
    var k_evEmax_gainLCN_LCN: dimensionless {init: 3.3299, interface: public};
    var k_br_gainLCN_LCN: dimensionless {init: 2.6617, interface: public};
    var k_esh_gainLCN_LCN: dimensionless {init: 0.0668, interface: public};
    var k_cp_gainLCN_LCN: dimensionless {init: 5.643, interface: public};
    var k_LCN_LCN: dimensionless {init: 2.8473, interface: public};
    var f_min_PNNA_PNNA: Hz {init: 0.857242, interface: public};
    var f_max_PNNA_PNNA: Hz {init: 12.624676, interface: public};
    var f_mid_PNNA_PNNA: Hz {init: 13.811104, interface: public};
    var f_vagal_stim_PNNA: Hz {init: 0.0, interface: public};
    var k_PNNA_PNNA: dimensionless {init: 3.230162, interface: public};
    var f_min_PNDMV_PNDMV: Hz {init: 2.4152, interface: public};
    var f_max_PNDMV_PNDMV: Hz {init: 17.719, interface: public};
    var f_mid_PNDMV_PNDMV: Hz {init: 14.1838, interface: public};
    var k_PNDMV_PNDMV: dimensionless {init: 13.3561, interface: public};
    var tau_PNDMV_PNDMV: second {init: 3.333, interface: public};
    var G_Ts_heart_effector_T: second {init: -0.13, interface: public};
    var G_Tv_heart_effector_T: s2 {init: 0.09, interface: public};
    var tau_Ts_heart_effector_T: second {init: 2, interface: public};
    var tau_Tv_heart_effector_T: second {init: 1.5, interface: public};
    var G_Es_heart_effector_Elv: J_per_m6 {init: 1.0e7, interface: public};
    var tau_Es_heart_effector_Elv: second {init: 2, interface: public};
    var G_Ev_heart_effector_Elv: Js_per_m6 {init: -0.5e7, interface: public};
    var tau_Ev_heart_effector_Elv: second {init: 0.2, interface: public};
    var scale_heart_effector_Elv: dimensionless {init: 1.0, interface: public};
    var G_Es_heart_effector_Erv: J_per_m6 {init: 0.5e7, interface: public};
    var tau_Es_heart_effector_Erv: second {init: 2, interface: public};
    var G_Ev_heart_effector_Erv: Js_per_m6 {init: -0.5e7, interface: public};
    var tau_Ev_heart_effector_Erv: second {init: 0.2, interface: public};
    var scale_heart_effector_Erv: dimensionless {init: 0.5903, interface: public};
    var tau_Rsp_peripheral_effector_arms: second {init: 2.0, interface: public};
    var G_Rsp_peripheral_effector_arms: Js_per_m6 {init: 92.6574e6, interface: public};
    var tau_Vusv_venous_volume_effector_lb: second {init: 5.0, interface: public};
    var G_Vusv_venous_volume_effector_lb: m3 {init: -265.4e-6, interface: public};
  enddef;

  def comp parameters_global as
    var f_es_min: Hz {init: 2.66, interface: public};
  enddef;

  def comp environment as
    var time: second {interface: public};
  enddef;

  def comp lung_stretch_module as
    var q_str: m3 {interface: public};
    var t: second {interface: public};
    var f_ls: Hz {init: 0, interface: public};
    var tau_lung: second {interface: public};
    var G_al: per_m3_s {interface: public};
    ode(f_ls, t) = (-f_ls+G_al*q_str)/tau_lung;
  enddef;

  def comp baroreceptor_module as
    var t: second {interface: public};
    var P_sys: J_per_m3 {interface: public};
    var P_baro_init: J_per_m3 {interface: public};
    var P_baro: J_per_m3 {init: P_baro_init, interface: public};
    var f_ab: Hz {interface: public};
    var dP_sys_dt: J_per_m3s {interface: public};
    var P_nom: J_per_m3 {interface: public};
    var f_ab_min: Hz {interface: public};
    var f_ab_max: Hz {interface: public};
    var k_ab: J_per_m3 {interface: public};
    var tau_zb: second {interface: public};
    var tau_pb: second {interface: public};
    ode(P_baro, t) = (P_sys+tau_zb*dP_sys_dt-P_baro)/tau_pb;
    f_ab = (f_ab_min+f_ab_max*exp((P_baro-P_nom)/k_ab))/(1{dimensionless}+exp((P_baro-P_nom)/k_ab));
  enddef;

  def comp cardiopulm_receptor_module as
    var P_pvn: J_per_m3 {interface: public};
    var P_mus: J_per_m3 {interface: public};
    var P_pv_P_thor: J_per_m3 {interface: public};
    var t: second {interface: public};
    var tau_cp: second {interface: public};
    var P_l_init: J_per_m3 {interface: public};
    var P_l: J_per_m3 {init: P_l_init, interface: public};
    var f_cp: Hz {interface: public};
    var f_maxl: Hz {interface: public};
    var P_tn: J_per_m3 {interface: public};
    var k_l: J_per_m3 {interface: public};
    P_pv_P_thor = P_pvn-P_mus;
    ode(P_l, t) = (-P_l+P_pv_P_thor)/tau_cp;
    f_cp = f_maxl/(1{dimensionless}+exp((P_tn-P_l)/k_l));
  enddef;

  def comp sympathetic_afferent_module as
    var t: second {interface: public};
    var f_ash: Hz {interface: public};
    var G_abh: dimensionless {interface: public};
    var f_br: Hz {interface: public};
    var G_alh: dimensionless {interface: public};
    var f_ls: Hz {interface: public};
    var G_ach: dimensionless {interface: public};
    var f_cp: Hz {interface: public};
    var f_asp: Hz {interface: public};
    var G_abp: dimensionless {interface: public};
    var G_alp: dimensionless {interface: public};
    var G_acp: dimensionless {interface: public};
    var f_asv: Hz {interface: public};
    var G_abv: dimensionless {interface: public};
    var G_alv: dimensionless {interface: public};
    var G_acv: dimensionless {interface: public};
    f_ash = G_abh*f_br-G_alh*f_ls+G_ach*(f_cp-10{Hz});
    f_asp = G_abp*f_br+G_alp*f_ls+G_acp*(f_cp-10{Hz});
    f_asv = G_abv*f_br+G_alv*f_ls+G_acv*(f_cp-10{Hz});
  enddef;

  def comp sympathetic_efferent_module as
    var t: second {interface: public};
    var f_esh: Hz {interface: public};
    var f_esinf: Hz {interface: public};
    var f_es0: Hz {interface: public};
    var k_es: second {interface: public};
    var f_ash: Hz {interface: public};
    var f_esp: Hz {interface: public};
    var f_asp: Hz {interface: public};
    var f_esv: Hz {interface: public};
    var f_asv: Hz {interface: public};
    f_esh = f_esinf+(f_es0-f_esinf)*exp(-k_es*f_ash);
    f_esp = f_esinf+(f_es0-f_esinf)*exp(-k_es*f_asp);
    f_esv = f_esinf+(f_es0-f_esinf)*exp(-k_es*f_asv);
  enddef;

  def comp NTS_module as
    var t: second {interface: public};
    var f_br: Hz {interface: public};
    var f_min_br: Hz {interface: public};
    var f_max_br: Hz {interface: public};
    var f_mid_br: Hz {interface: public};
    var f_NTS_br: Hz {interface: public};
    var k_NTS_br: dimensionless {interface: public};
    var f_ls: Hz {interface: public};
    var f_min_ls: Hz {interface: public};
    var f_max_ls: Hz {interface: public};
    var f_mid_ls: Hz {interface: public};
    var f_NTS_ls: Hz {interface: public};
    var k_NTS_ls: dimensionless {interface: public};
    var f_cp: Hz {interface: public};
    var f_min_cp: Hz {interface: public};
    var f_max_cp: Hz {interface: public};
    var f_mid_cp: Hz {interface: public};
    var f_NTS_cp: Hz {interface: public};
    var k_NTS_cp: dimensionless {interface: public};
    var f_apc: Hz {interface: public};
    var f_min_ch: Hz {interface: public};
    var f_max_ch: Hz {interface: public};
    var f_mid_ch: Hz {interface: public};
    var f_NTS_ch: Hz {interface: public};
    var k_NTS_ch: dimensionless {interface: public};
    f_NTS_br = (f_min_br-f_max_br)/(1{dimensionless}+pow(f_br/f_mid_br, k_NTS_br))+f_max_br;
    f_NTS_ls = (f_min_ls-f_max_ls)/(1{dimensionless}+pow(f_ls/f_mid_ls, k_NTS_ls))+f_max_ls;
    f_NTS_cp = (f_min_cp-f_max_cp)/(1{dimensionless}+pow(f_cp/f_mid_cp, k_NTS_cp))+f_max_cp;
    f_NTS_ch = (f_min_ch-f_max_ch)/(1{dimensionless}+pow(f_apc/f_mid_ch, k_NTS_ch))+f_max_ch;
  enddef;

  def comp DMV_module as
    var t: second {interface: public};
    var f_NTS_ls: Hz {interface: public};
    var f_NTS_cp: Hz {interface: public};
    var f_min_DMV: Hz {interface: public};
    var f_max_DMV: Hz {interface: public};
    var f_mid_DMV: Hz {interface: public};
    var f_DMV: Hz {interface: public};
    var k_DMV: dimensionless {interface: public};
    f_DMV = (f_min_DMV-f_max_DMV)/(1{dimensionless}+pow((f_NTS_ls+f_NTS_cp)/f_mid_DMV, k_DMV))+f_max_DMV;
  enddef;

  def comp NA_module as
    var t: second {interface: public};
    var f_NTS_br: Hz {interface: public};
    var f_NTS_ls: Hz {interface: public};
    var f_NTS_cp: Hz {interface: public};
    var f_NTS_ch: Hz {interface: public};
    var f_NTS_output: Hz {interface: public};
    var f_NA_input: Hz {interface: public};
    var k_RSA: dimensionless {interface: public};
    var s_floor: dimensionless {interface: public};
    var f_min_NA: Hz {interface: public};
    var f_max_NA: Hz {interface: public};
    var f_mid_NA: Hz {interface: public};
    var f_NA: Hz {interface: public};
    var k_NA: dimensionless {interface: public};
    f_NTS_output = f_NTS_br+f_NTS_ls+f_NTS_cp+f_NTS_ch;
    f_NA_input = sel
      case s_floor > 0.4{dimensionless}:
        f_NTS_output;
      otherwise:
        f_NTS_output*k_RSA;
    endsel;
    f_NA = (f_min_NA-f_max_NA)/(1{dimensionless}+pow(f_NA_input/f_mid_NA, k_NA))+f_max_NA;
  enddef;

  def comp NActr_module as
    var t: second {interface: public};
    var f_NA: Hz {interface: public};
    var f_min_NActr: Hz {interface: public};
    var f_max_NActr: Hz {interface: public};
    var f_mid_NActr: Hz {interface: public};
    var f_NActr: Hz {interface: public};
    var k_NActr: dimensionless {interface: public};
    f_NActr = (f_min_NActr-f_max_NActr)/(1{dimensionless}+pow(f_NA/f_mid_NActr, k_NActr))+f_max_NActr;
  enddef;

  def comp LCN_module as
    var t: second {interface: public};
    var k_evEmax_gainLCN: dimensionless {interface: public};
    var f_DMV: Hz {interface: public};
    var f_NActr: Hz {interface: public};
    var k_br_gainLCN: dimensionless {interface: public};
    var f_br: Hz {interface: public};
    var k_esh_gainLCN: dimensionless {interface: public};
    var f_esh: Hz {interface: public};
    var k_cp_gainLCN: dimensionless {interface: public};
    var f_cp: Hz {interface: public};
    var f_input_LCN_sum: Hz {interface: public};
    var f_input_LCN: Hz {interface: public};
    var f_LCN: Hz {interface: public};
    var f_mid_LCN: Hz {interface: public};
    var f_min_LCN: Hz {interface: public};
    var f_max_LCN: Hz {interface: public};
    var k_LCN: dimensionless {interface: public};
    f_input_LCN_sum = k_evEmax_gainLCN*(f_DMV+f_NActr)+k_br_gainLCN*f_br-k_esh_gainLCN*f_esh+k_cp_gainLCN*f_cp;
    f_input_LCN = sel
      case f_input_LCN_sum >= 0{Hz}:
        f_input_LCN_sum;
      otherwise:
        0{Hz};
    endsel;
    f_LCN = (f_min_LCN-f_max_LCN)/(1{dimensionless}+pow(f_input_LCN/f_mid_LCN, k_LCN))+f_max_LCN;
  enddef;

  def comp PNNA_module as
    var t: second {interface: public};
    var f_PNNA_natural: Hz {interface: public};
    var f_PNNA: Hz {interface: public};
    var f_NA: Hz {interface: public};
    var f_LCN: Hz {interface: public};
    var f_mid_PNNA: Hz {interface: public};
    var f_min_PNNA: Hz {interface: public};
    var f_max_PNNA: Hz {interface: public};
    var k_PNNA: dimensionless {interface: public};
    var f_vagal_stim: Hz {interface: public};
    f_PNNA_natural = (f_min_PNNA-f_max_PNNA)/(1{dimensionless}+pow((f_NA+f_LCN)/f_mid_PNNA, k_PNNA))+f_max_PNNA;
    f_PNNA = f_PNNA_natural+f_vagal_stim;
  enddef;

  def comp PNDMV_module as
    var f_PNDMV: Hz {interface: public};
    var f_DMV: Hz {interface: public};
    var f_NActr: Hz {interface: public};
    var f_LCN: Hz {interface: public};
    var f_mid_PNDMV: Hz {interface: public};
    var f_min_PNDMV: Hz {interface: public};
    var f_max_PNDMV: Hz {interface: public};
    var k_PNDMV: dimensionless {interface: public};
    var f_PNDMV_filt: Hz {init: 0, interface: public};
    var tau_PNDMV: second {interface: public};
    var t: second {interface: public};
    f_PNDMV = (f_min_PNDMV-f_max_PNDMV)/(1{dimensionless}+pow((f_DMV+f_NActr+f_LCN)/f_mid_PNDMV, k_PNDMV))+f_max_PNDMV;
    ode(f_PNDMV_filt, t) = (f_PNDMV-f_PNDMV_filt)/tau_PNDMV;
  enddef;

  def comp heart_effector_T_module as
    var t: second {interface: public};
    var G_Ts: second {interface: public};
    var G_Tv: s2 {interface: public};
    var f_es_min: Hz {interface: public};
    var tau_Ts: second {interface: public};
    var tau_Tv: second {interface: public};
    var f_s: Hz {interface: public};
    var f_v: Hz {interface: public};
    var Delta_Ts: second {init: 0.0, interface: public};
    var Delta_Tv: second {init: 0.0, interface: public};
    var Delta_T: second {interface: public};
    var sigma_Ts: second {interface: public};
    var sigma_Tv: second {interface: public};
    sigma_Ts = sel
      case f_s >= f_es_min:
        G_Ts*ln(1{second}*(f_s-f_es_min+1{Hz}));
      otherwise:
        0{second};
    endsel;
    ode(Delta_Ts, t) = (-Delta_Ts+sigma_Ts)/tau_Ts;
    sigma_Tv = G_Tv*f_v;
    // DELAY IGNORED
    ode(Delta_Tv, t) = (-Delta_Tv+sigma_Tv)/tau_Tv;
    Delta_T = Delta_Tv+Delta_Ts;
  enddef;

  def comp heart_effector_Elv_module as
    var sigma_Es: J_per_m6 {interface: public};
    var G_Es: J_per_m6 {interface: public};
    var f_esh: Hz {interface: public};
    var t: second {interface: public};
    var f_es_min: Hz {interface: public};
    var Delta_Es: J_per_m6 {init: 0.0, interface: public};
    var tau_Es: second {interface: public};
    var sigma_Ev: J_per_m6 {interface: public};
    var G_Ev: Js_per_m6 {interface: public};
    var f_PNDMV_filt: Hz {interface: public};
    var Delta_Ev: J_per_m6 {init: 0.0, interface: public};
    var tau_Ev: second {interface: public};
    var Delta_Emax: J_per_m6 {interface: public};
    var scale: dimensionless {interface: public};
    sigma_Es = sel
      case f_esh >= f_es_min:
        G_Es*ln(1{second}*(f_esh-f_es_min+1{Hz}));
      otherwise:
        0{J_per_m6};
    endsel;
    ode(Delta_Es, t) = 1{dimensionless}/tau_Es*(-Delta_Es+sigma_Es);
    sigma_Ev = G_Ev*f_PNDMV_filt;
    ode(Delta_Ev, t) = 1{dimensionless}/tau_Ev*(-Delta_Ev+sigma_Ev);
    Delta_Emax = scale*(Delta_Es+Delta_Ev);
  enddef;

  def comp heart_effector_Erv_module as
    var sigma_Es: J_per_m6 {interface: public};
    var G_Es: J_per_m6 {interface: public};
    var f_esh: Hz {interface: public};
    var t: second {interface: public};
    var f_es_min: Hz {interface: public};
    var Delta_Es: J_per_m6 {init: 0.0, interface: public};
    var tau_Es: second {interface: public};
    var sigma_Ev: J_per_m6 {interface: public};
    var G_Ev: Js_per_m6 {interface: public};
    var f_PNDMV_filt: Hz {interface: public};
    var Delta_Ev: J_per_m6 {init: 0.0, interface: public};
    var tau_Ev: second {interface: public};
    var Delta_Emax: J_per_m6 {interface: public};
    var scale: dimensionless {interface: public};
    sigma_Es = sel
      case f_esh >= f_es_min:
        G_Es*ln(1{second}*(f_esh-f_es_min+1{Hz}));
      otherwise:
        0{J_per_m6};
    endsel;
    ode(Delta_Es, t) = 1{dimensionless}/tau_Es*(-Delta_Es+sigma_Es);
    sigma_Ev = G_Ev*f_PNDMV_filt;
    ode(Delta_Ev, t) = 1{dimensionless}/tau_Ev*(-Delta_Ev+sigma_Ev);
    Delta_Emax = scale*(Delta_Es+Delta_Ev);
  enddef;

  def comp peripheral_effector_arms_module as
    var sigma_Rsp: Js_per_m6 {interface: public};
    var G_Rsp: Js_per_m6 {interface: public};
    var f_esp: Hz {interface: public};
    var t: second {interface: public};
    var f_es_min: Hz {interface: public};
    var Delta_Rsp: Js_per_m6 {init: 0, interface: public};
    var tau_Rsp: second {interface: public};
    sigma_Rsp = sel
      case f_esp >= f_es_min:
        G_Rsp*ln(1{second}*(f_esp-f_es_min+1{Hz}));
      otherwise:
        0{Js_per_m6};
    endsel;
    ode(Delta_Rsp, t) = 1{dimensionless}/tau_Rsp*(-Delta_Rsp+sigma_Rsp);
  enddef;

  def comp venous_volume_effector_lb_module as
    var sigma_Vusv: m3 {interface: public};
    var G_Vusv: m3 {interface: public};
    var f_esv: Hz {interface: public};
    var t: second {interface: public};
    var f_es_min: Hz {interface: public};
    var Delta_Vusv: m3 {init: 0, interface: public};
    var tau_Vusv: second {interface: public};
    sigma_Vusv = sel
      case f_esv >= f_es_min:
        G_Vusv*ln(1{second}*(f_esv-f_es_min+1{Hz}));
      otherwise:
        0{m3};
    endsel;
    ode(Delta_Vusv, t) = 1{dimensionless}/tau_Vusv*(-Delta_Vusv+sigma_Vusv);
  enddef;

  def comp terminal_venous_connection as
  enddef;

  def comp generic_junction_connection as
  enddef;

  def comp lung_stretch as
    var f_ls: Hz {interface: public};
    var tau_lung: second {interface: public};
    var G_al: per_m3_s {interface: public};
    var q_str: m3 {interface: public};
  enddef;

  def comp baroreceptor as
    var P_sys: J_per_m3 {interface: public};
    var P_baro: J_per_m3 {interface: public};
    var P_baro_init: J_per_m3 {interface: public};
    var P_nom: J_per_m3 {interface: public};
    var dP_sys_dt: J_per_m3s {interface: public};
    var f_ab: per_s {interface: public};
    var tau_zb: second {interface: public};
    var tau_pb: second {interface: public};
    var f_ab_min: per_s {interface: public};
    var f_ab_max: per_s {interface: public};
    var k_ab: J_per_m3 {interface: public};
  enddef;

  def comp cardiopulm_receptor as
    var f_cp: Hz {interface: public};
    var P_pv_P_thor: J_per_m3 {interface: public};
    var tau_cp: second {interface: public};
    var P_l_init: J_per_m3 {interface: public};
    var P_l: J_per_m3 {interface: public};
    var f_maxl: Hz {interface: public};
    var P_tn: J_per_m3 {interface: public};
    var k_l: J_per_m3 {interface: public};
    var P_pvn: J_per_m3 {interface: public};
    var P_mus: J_per_m3 {interface: public};
  enddef;

  def comp sympathetic_afferent as
    var f_ash: Hz {interface: public};
    var f_asp: Hz {interface: public};
    var f_asv: Hz {interface: public};
    var G_abh: dimensionless {interface: public};
    var G_alh: dimensionless {interface: public};
    var G_ach: dimensionless {interface: public};
    var G_abp: dimensionless {interface: public};
    var G_alp: dimensionless {interface: public};
    var G_acp: dimensionless {interface: public};
    var G_abv: dimensionless {interface: public};
    var G_alv: dimensionless {interface: public};
    var G_acv: dimensionless {interface: public};
  enddef;

  def comp sympathetic_efferent as
    var f_esh: Hz {interface: public};
    var f_esp: Hz {interface: public};
    var f_esv: Hz {interface: public};
    var f_esinf: Hz {interface: public};
    var f_es0: Hz {interface: public};
    var k_es: second {interface: public};
  enddef;

  def comp NTS as
    var f_NTS_br: Hz {interface: public};
    var f_NTS_ls: Hz {interface: public};
    var f_NTS_cp: Hz {interface: public};
    var f_NTS_ch: Hz {interface: public};
    var f_apc: Hz {interface: public};
    var f_min_br: Hz {interface: public};
    var f_max_br: Hz {interface: public};
    var f_mid_br: Hz {interface: public};
    var f_min_ls: Hz {interface: public};
    var f_max_ls: Hz {interface: public};
    var f_mid_ls: Hz {interface: public};
    var f_min_cp: Hz {interface: public};
    var f_max_cp: Hz {interface: public};
    var f_mid_cp: Hz {interface: public};
    var f_min_ch: Hz {interface: public};
    var f_max_ch: Hz {interface: public};
    var f_mid_ch: Hz {interface: public};
    var k_NTS_br: dimensionless {interface: public};
    var k_NTS_ls: dimensionless {interface: public};
    var k_NTS_cp: dimensionless {interface: public};
    var k_NTS_ch: dimensionless {interface: public};
  enddef;

  def comp DMV as
    var f_DMV: Hz {interface: public};
    var f_min_DMV: Hz {interface: public};
    var f_max_DMV: Hz {interface: public};
    var f_mid_DMV: Hz {interface: public};
    var k_DMV: dimensionless {interface: public};
  enddef;

  def comp NA as
    var s_floor: dimensionless {interface: public};
    var f_NA: Hz {interface: public};
    var f_NTS_output: Hz {interface: public};
    var f_NA_input: Hz {interface: public};
    var f_min_NA: Hz {interface: public};
    var f_max_NA: Hz {interface: public};
    var f_mid_NA: Hz {interface: public};
    var k_RSA: dimensionless {interface: public};
    var k_NA: dimensionless {interface: public};
  enddef;

  def comp NActr as
    var f_NActr: Hz {interface: public};
    var f_min_NActr: Hz {interface: public};
    var f_max_NActr: Hz {interface: public};
    var f_mid_NActr: Hz {interface: public};
    var k_NActr: dimensionless {interface: public};
  enddef;

  def comp LCN as
    var f_LCN: Hz {interface: public};
    var f_input_LCN_sum: Hz {interface: public};
    var f_input_LCN: Hz {interface: public};
    var f_min_LCN: Hz {interface: public};
    var f_max_LCN: Hz {interface: public};
    var f_mid_LCN: Hz {interface: public};
    var k_evEmax_gainLCN: dimensionless {interface: public};
    var k_br_gainLCN: dimensionless {interface: public};
    var k_esh_gainLCN: dimensionless {interface: public};
    var k_cp_gainLCN: dimensionless {interface: public};
    var k_LCN: dimensionless {interface: public};
  enddef;

  def comp PNNA as
    var f_PNNA: Hz {interface: public};
    var f_PNNA_natural: Hz {interface: public};
    var f_min_PNNA: Hz {interface: public};
    var f_max_PNNA: Hz {interface: public};
    var f_mid_PNNA: Hz {interface: public};
    var f_vagal_stim: Hz {interface: public};
    var k_PNNA: dimensionless {interface: public};
  enddef;

  def comp PNDMV as
    var f_PNDMV: Hz {interface: public};
    var f_PNDMV_filt: Hz {interface: public};
    var f_min_PNDMV: Hz {interface: public};
    var f_max_PNDMV: Hz {interface: public};
    var f_mid_PNDMV: Hz {interface: public};
    var k_PNDMV: dimensionless {interface: public};
    var tau_PNDMV: second {interface: public};
  enddef;

  def comp heart_effector_T as
    var G_Ts: second {interface: public};
    var G_Tv: s2 {interface: public};
    var f_es_min: per_s {interface: public};
    var tau_Ts: second {interface: public};
    var tau_Tv: second {interface: public};
    var Delta_Ts: second {interface: public};
    var Delta_Tv: second {interface: public};
    var Delta_T: second {interface: public};
    var sigma_Ts: second {interface: public};
    var sigma_Tv: second {interface: public};
  enddef;

  def comp heart_effector_Elv as
    var G_Es: J_per_m6 {interface: public};
    var f_es_min: per_s {interface: public};
    var tau_Es: second {interface: public};
    var Delta_Es: J_per_m6 {interface: public};
    var sigma_Es: J_per_m6 {interface: public};
    var G_Ev: Js_per_m6 {interface: public};
    var tau_Ev: second {interface: public};
    var Delta_Ev: J_per_m6 {interface: public};
    var sigma_Ev: J_per_m6 {interface: public};
    var Delta_Emax: J_per_m6 {interface: public};
    var scale: dimensionless {interface: public};
  enddef;

  def comp heart_effector_Erv as
    var G_Es: J_per_m6 {interface: public};
    var f_es_min: per_s {interface: public};
    var tau_Es: second {interface: public};
    var Delta_Es: J_per_m6 {interface: public};
    var sigma_Es: J_per_m6 {interface: public};
    var G_Ev: Js_per_m6 {interface: public};
    var tau_Ev: second {interface: public};
    var Delta_Ev: J_per_m6 {interface: public};
    var sigma_Ev: J_per_m6 {interface: public};
    var Delta_Emax: J_per_m6 {interface: public};
    var scale: dimensionless {interface: public};
  enddef;

  def comp peripheral_effector_arms as
    var Delta_Rsp: Js_per_m6 {interface: public};
    var tau_Rsp: second {interface: public};
    var sigma_Rsp: Js_per_m6 {interface: public};
    var f_es_min: per_s {interface: public};
    var G_Rsp: Js_per_m6 {interface: public};
  enddef;

  def comp venous_volume_effector_lb as
    var Delta_Vusv: m3 {interface: public};
    var tau_Vusv: second {interface: public};
    var sigma_Vusv: m3 {interface: public};
    var f_es_min: per_s {interface: public};
    var G_Vusv: m3 {interface: public};
  enddef;

  def comp global as
    var f_es_min: per_s {interface: public};
  enddef;
  def map between parameters and lung_stretch_module for
    vars tau_lung_lung_stretch and tau_lung;
    vars G_al_lung_stretch and G_al;
    vars q_str_lung_stretch and q_str;
  enddef;
  def map between parameters and baroreceptor_module for
    vars P_baro_init_baroreceptor and P_baro_init;
    vars P_nom_baroreceptor and P_nom;
    vars tau_zb_baroreceptor and tau_zb;
    vars tau_pb_baroreceptor and tau_pb;
    vars f_ab_min_baroreceptor and f_ab_min;
    vars f_ab_max_baroreceptor and f_ab_max;
    vars k_ab_baroreceptor and k_ab;
    vars P_sys_baroreceptor and P_sys;
    vars dP_sys_dt_baroreceptor and dP_sys_dt;
  enddef;
  def map between parameters and cardiopulm_receptor_module for
    vars tau_cp_cardiopulm_receptor and tau_cp;
    vars P_l_init_cardiopulm_receptor and P_l_init;
    vars f_maxl_cardiopulm_receptor and f_maxl;
    vars P_tn_cardiopulm_receptor and P_tn;
    vars k_l_cardiopulm_receptor and k_l;
    vars P_pvn_cardiopulm_receptor and P_pvn;
    vars P_mus_cardiopulm_receptor and P_mus;
  enddef;
  def map between parameters and sympathetic_afferent_module for
    vars G_abh_sympathetic_afferent and G_abh;
    vars G_alh_sympathetic_afferent and G_alh;
    vars G_ach_sympathetic_afferent and G_ach;
    vars G_abp_sympathetic_afferent and G_abp;
    vars G_alp_sympathetic_afferent and G_alp;
    vars G_acp_sympathetic_afferent and G_acp;
    vars G_abv_sympathetic_afferent and G_abv;
    vars G_alv_sympathetic_afferent and G_alv;
    vars G_acv_sympathetic_afferent and G_acv;
  enddef;
  def map between parameters and sympathetic_efferent_module for
    vars f_esinf_sympathetic_efferent and f_esinf;
    vars f_es0_sympathetic_efferent and f_es0;
    vars k_es_sympathetic_efferent and k_es;
  enddef;
  def map between parameters and NTS_module for
    vars f_min_br_NTS and f_min_br;
    vars f_max_br_NTS and f_max_br;
    vars f_mid_br_NTS and f_mid_br;
    vars f_min_ls_NTS and f_min_ls;
    vars f_max_ls_NTS and f_max_ls;
    vars f_mid_ls_NTS and f_mid_ls;
    vars f_min_cp_NTS and f_min_cp;
    vars f_max_cp_NTS and f_max_cp;
    vars f_mid_cp_NTS and f_mid_cp;
    vars f_min_ch_NTS and f_min_ch;
    vars f_max_ch_NTS and f_max_ch;
    vars f_mid_ch_NTS and f_mid_ch;
    vars k_NTS_br_NTS and k_NTS_br;
    vars k_NTS_ls_NTS and k_NTS_ls;
    vars k_NTS_cp_NTS and k_NTS_cp;
    vars k_NTS_ch_NTS and k_NTS_ch;
    vars f_apc_NTS and f_apc;
  enddef;
  def map between parameters and DMV_module for
    vars f_min_DMV_DMV and f_min_DMV;
    vars f_max_DMV_DMV and f_max_DMV;
    vars f_mid_DMV_DMV and f_mid_DMV;
    vars k_DMV_DMV and k_DMV;
  enddef;
  def map between parameters and NA_module for
    vars f_min_NA_NA and f_min_NA;
    vars f_max_NA_NA and f_max_NA;
    vars f_mid_NA_NA and f_mid_NA;
    vars k_RSA_NA and k_RSA;
    vars k_NA_NA and k_NA;
    vars s_floor_NA and s_floor;
  enddef;
  def map between parameters and NActr_module for
    vars f_min_NActr_NActr and f_min_NActr;
    vars f_max_NActr_NActr and f_max_NActr;
    vars f_mid_NActr_NActr and f_mid_NActr;
    vars k_NActr_NActr and k_NActr;
  enddef;
  def map between parameters and LCN_module for
    vars f_min_LCN_LCN and f_min_LCN;
    vars f_max_LCN_LCN and f_max_LCN;
    vars f_mid_LCN_LCN and f_mid_LCN;
    vars k_evEmax_gainLCN_LCN and k_evEmax_gainLCN;
    vars k_br_gainLCN_LCN and k_br_gainLCN;
    vars k_esh_gainLCN_LCN and k_esh_gainLCN;
    vars k_cp_gainLCN_LCN and k_cp_gainLCN;
    vars k_LCN_LCN and k_LCN;
  enddef;
  def map between parameters and PNNA_module for
    vars f_min_PNNA_PNNA and f_min_PNNA;
    vars f_max_PNNA_PNNA and f_max_PNNA;
    vars f_mid_PNNA_PNNA and f_mid_PNNA;
    vars f_vagal_stim_PNNA and f_vagal_stim;
    vars k_PNNA_PNNA and k_PNNA;
  enddef;
  def map between parameters and PNDMV_module for
    vars f_min_PNDMV_PNDMV and f_min_PNDMV;
    vars f_max_PNDMV_PNDMV and f_max_PNDMV;
    vars f_mid_PNDMV_PNDMV and f_mid_PNDMV;
    vars k_PNDMV_PNDMV and k_PNDMV;
    vars tau_PNDMV_PNDMV and tau_PNDMV;
  enddef;
  def map between parameters and heart_effector_T_module for
    vars G_Ts_heart_effector_T and G_Ts;
    vars G_Tv_heart_effector_T and G_Tv;
    vars tau_Ts_heart_effector_T and tau_Ts;
    vars tau_Tv_heart_effector_T and tau_Tv;
  enddef;
  def map between parameters and heart_effector_Elv_module for
    vars G_Es_heart_effector_Elv and G_Es;
    vars tau_Es_heart_effector_Elv and tau_Es;
    vars G_Ev_heart_effector_Elv and G_Ev;
    vars tau_Ev_heart_effector_Elv and tau_Ev;
    vars scale_heart_effector_Elv and scale;
  enddef;
  def map between parameters and heart_effector_Erv_module for
    vars G_Es_heart_effector_Erv and G_Es;
    vars tau_Es_heart_effector_Erv and tau_Es;
    vars G_Ev_heart_effector_Erv and G_Ev;
    vars tau_Ev_heart_effector_Erv and tau_Ev;
    vars scale_heart_effector_Erv and scale;
  enddef;
  def map between parameters and peripheral_effector_arms_module for
    vars tau_Rsp_peripheral_effector_arms and tau_Rsp;
    vars G_Rsp_peripheral_effector_arms and G_Rsp;
  enddef;
  def map between parameters and venous_volume_effector_lb_module for
    vars tau_Vusv_venous_volume_effector_lb and tau_Vusv;
    vars G_Vusv_venous_volume_effector_lb and G_Vusv;
  enddef;
  def map between parameters_global and global for
    vars f_es_min and f_es_min;
  enddef;
  def map between parameters_global and heart_effector_T_module for
    vars f_es_min and f_es_min;
  enddef;
  def map between parameters_global and heart_effector_Elv_module for
    vars f_es_min and f_es_min;
  enddef;
  def map between parameters_global and heart_effector_Erv_module for
    vars f_es_min and f_es_min;
  enddef;
  def map between parameters_global and peripheral_effector_arms_module for
    vars f_es_min and f_es_min;
  enddef;
  def map between parameters_global and venous_volume_effector_lb_module for
    vars f_es_min and f_es_min;
  enddef;
  def map between environment and lung_stretch_module for
    vars time and t;
  enddef;
  def map between environment and baroreceptor_module for
    vars time and t;
  enddef;
  def map between environment and cardiopulm_receptor_module for
    vars time and t;
  enddef;
  def map between environment and sympathetic_afferent_module for
    vars time and t;
  enddef;
  def map between environment and sympathetic_efferent_module for
    vars time and t;
  enddef;
  def map between environment and NTS_module for
    vars time and t;
  enddef;
  def map between environment and DMV_module for
    vars time and t;
  enddef;
  def map between environment and NA_module for
    vars time and t;
  enddef;
  def map between environment and NActr_module for
    vars time and t;
  enddef;
  def map between environment and LCN_module for
    vars time and t;
  enddef;
  def map between environment and PNNA_module for
    vars time and t;
  enddef;
  def map between environment and PNDMV_module for
    vars time and t;
  enddef;
  def map between environment and heart_effector_T_module for
    vars time and t;
  enddef;
  def map between environment and heart_effector_Elv_module for
    vars time and t;
  enddef;
  def map between environment and heart_effector_Erv_module for
    vars time and t;
  enddef;
  def map between environment and peripheral_effector_arms_module for
    vars time and t;
  enddef;
  def map between environment and venous_volume_effector_lb_module for
    vars time and t;
  enddef;
  def map between lung_stretch_module and lung_stretch for
    vars q_str and q_str;
    vars f_ls and f_ls;
    vars tau_lung and tau_lung;
    vars G_al and G_al;
  enddef;
  def map between lung_stretch_module and sympathetic_afferent_module for
    vars f_ls and f_ls;
  enddef;
  def map between lung_stretch_module and NTS_module for
    vars f_ls and f_ls;
  enddef;
  def map between baroreceptor_module and baroreceptor for
    vars P_sys and P_sys;
    vars P_baro_init and P_baro_init;
    vars P_baro and P_baro;
    vars f_ab and f_ab;
    vars dP_sys_dt and dP_sys_dt;
    vars P_nom and P_nom;
    vars f_ab_min and f_ab_min;
    vars f_ab_max and f_ab_max;
    vars k_ab and k_ab;
    vars tau_zb and tau_zb;
    vars tau_pb and tau_pb;
  enddef;
  def map between baroreceptor_module and sympathetic_afferent_module for
    vars f_ab and f_br;
  enddef;
  def map between baroreceptor_module and NTS_module for
    vars f_ab and f_br;
  enddef;
  def map between baroreceptor_module and LCN_module for
    vars f_ab and f_br;
  enddef;
  def map between cardiopulm_receptor_module and cardiopulm_receptor for
    vars P_pvn and P_pvn;
    vars P_mus and P_mus;
    vars P_pv_P_thor and P_pv_P_thor;
    vars tau_cp and tau_cp;
    vars P_l_init and P_l_init;
    vars P_l and P_l;
    vars f_cp and f_cp;
    vars f_maxl and f_maxl;
    vars P_tn and P_tn;
    vars k_l and k_l;
  enddef;
  def map between cardiopulm_receptor_module and sympathetic_afferent_module for
    vars f_cp and f_cp;
  enddef;
  def map between cardiopulm_receptor_module and NTS_module for
    vars f_cp and f_cp;
  enddef;
  def map between cardiopulm_receptor_module and LCN_module for
    vars f_cp and f_cp;
  enddef;
  def map between sympathetic_afferent_module and sympathetic_afferent for
    vars f_ash and f_ash;
    vars G_abh and G_abh;
    vars G_alh and G_alh;
    vars G_ach and G_ach;
    vars f_asp and f_asp;
    vars G_abp and G_abp;
    vars G_alp and G_alp;
    vars G_acp and G_acp;
    vars f_asv and f_asv;
    vars G_abv and G_abv;
    vars G_alv and G_alv;
    vars G_acv and G_acv;
  enddef;
  def map between sympathetic_afferent_module and sympathetic_efferent_module for
    vars f_ash and f_ash;
    vars f_asp and f_asp;
    vars f_asv and f_asv;
  enddef;
  def map between sympathetic_efferent_module and sympathetic_efferent for
    vars f_esh and f_esh;
    vars f_esinf and f_esinf;
    vars f_es0 and f_es0;
    vars k_es and k_es;
    vars f_esp and f_esp;
    vars f_esv and f_esv;
  enddef;
  def map between sympathetic_efferent_module and LCN_module for
    vars f_esh and f_esh;
  enddef;
  def map between sympathetic_efferent_module and heart_effector_T_module for
    vars f_esh and f_s;
  enddef;
  def map between sympathetic_efferent_module and heart_effector_Elv_module for
    vars f_esh and f_esh;
  enddef;
  def map between sympathetic_efferent_module and heart_effector_Erv_module for
    vars f_esh and f_esh;
  enddef;
  def map between sympathetic_efferent_module and peripheral_effector_arms_module for
    vars f_esp and f_esp;
  enddef;
  def map between sympathetic_efferent_module and venous_volume_effector_lb_module for
    vars f_esv and f_esv;
  enddef;
  def map between NTS_module and NTS for
    vars f_min_br and f_min_br;
    vars f_max_br and f_max_br;
    vars f_mid_br and f_mid_br;
    vars f_NTS_br and f_NTS_br;
    vars k_NTS_br and k_NTS_br;
    vars f_min_ls and f_min_ls;
    vars f_max_ls and f_max_ls;
    vars f_mid_ls and f_mid_ls;
    vars f_NTS_ls and f_NTS_ls;
    vars k_NTS_ls and k_NTS_ls;
    vars f_min_cp and f_min_cp;
    vars f_max_cp and f_max_cp;
    vars f_mid_cp and f_mid_cp;
    vars f_NTS_cp and f_NTS_cp;
    vars k_NTS_cp and k_NTS_cp;
    vars f_apc and f_apc;
    vars f_min_ch and f_min_ch;
    vars f_max_ch and f_max_ch;
    vars f_mid_ch and f_mid_ch;
    vars f_NTS_ch and f_NTS_ch;
    vars k_NTS_ch and k_NTS_ch;
  enddef;
  def map between NTS_module and NA_module for
    vars f_NTS_br and f_NTS_br;
    vars f_NTS_ls and f_NTS_ls;
    vars f_NTS_cp and f_NTS_cp;
    vars f_NTS_ch and f_NTS_ch;
  enddef;
  def map between NTS_module and DMV_module for
    vars f_NTS_ls and f_NTS_ls;
    vars f_NTS_cp and f_NTS_cp;
  enddef;
  def map between DMV_module and DMV for
    vars f_min_DMV and f_min_DMV;
    vars f_max_DMV and f_max_DMV;
    vars f_mid_DMV and f_mid_DMV;
    vars f_DMV and f_DMV;
    vars k_DMV and k_DMV;
  enddef;
  def map between DMV_module and LCN_module for
    vars f_DMV and f_DMV;
  enddef;
  def map between DMV_module and PNDMV_module for
    vars f_DMV and f_DMV;
  enddef;
  def map between NA_module and NA for
    vars f_NTS_output and f_NTS_output;
    vars f_NA_input and f_NA_input;
    vars k_RSA and k_RSA;
    vars s_floor and s_floor;
    vars f_min_NA and f_min_NA;
    vars f_max_NA and f_max_NA;
    vars f_mid_NA and f_mid_NA;
    vars f_NA and f_NA;
    vars k_NA and k_NA;
  enddef;
  def map between NA_module and NActr_module for
    vars f_NA and f_NA;
  enddef;
  def map between NA_module and PNNA_module for
    vars f_NA and f_NA;
  enddef;
  def map between NActr_module and NActr for
    vars f_min_NActr and f_min_NActr;
    vars f_max_NActr and f_max_NActr;
    vars f_mid_NActr and f_mid_NActr;
    vars f_NActr and f_NActr;
    vars k_NActr and k_NActr;
  enddef;
  def map between NActr_module and LCN_module for
    vars f_NActr and f_NActr;
  enddef;
  def map between NActr_module and PNDMV_module for
    vars f_NActr and f_NActr;
  enddef;
  def map between LCN_module and LCN for
    vars k_evEmax_gainLCN and k_evEmax_gainLCN;
    vars k_br_gainLCN and k_br_gainLCN;
    vars k_esh_gainLCN and k_esh_gainLCN;
    vars k_cp_gainLCN and k_cp_gainLCN;
    vars f_input_LCN_sum and f_input_LCN_sum;
    vars f_input_LCN and f_input_LCN;
    vars f_LCN and f_LCN;
    vars f_mid_LCN and f_mid_LCN;
    vars f_min_LCN and f_min_LCN;
    vars f_max_LCN and f_max_LCN;
    vars k_LCN and k_LCN;
  enddef;
  def map between LCN_module and PNNA_module for
    vars f_LCN and f_LCN;
  enddef;
  def map between LCN_module and PNDMV_module for
    vars f_LCN and f_LCN;
  enddef;
  def map between PNNA_module and PNNA for
    vars f_PNNA_natural and f_PNNA_natural;
    vars f_PNNA and f_PNNA;
    vars f_mid_PNNA and f_mid_PNNA;
    vars f_min_PNNA and f_min_PNNA;
    vars f_max_PNNA and f_max_PNNA;
    vars k_PNNA and k_PNNA;
    vars f_vagal_stim and f_vagal_stim;
  enddef;
  def map between PNNA_module and heart_effector_T_module for
    vars f_PNNA and f_v;
  enddef;
  def map between PNDMV_module and PNDMV for
    vars f_PNDMV and f_PNDMV;
    vars f_mid_PNDMV and f_mid_PNDMV;
    vars f_min_PNDMV and f_min_PNDMV;
    vars f_max_PNDMV and f_max_PNDMV;
    vars k_PNDMV and k_PNDMV;
    vars f_PNDMV_filt and f_PNDMV_filt;
    vars tau_PNDMV and tau_PNDMV;
  enddef;
  def map between PNDMV_module and heart_effector_Elv_module for
    vars f_PNDMV_filt and f_PNDMV_filt;
  enddef;
  def map between PNDMV_module and heart_effector_Erv_module for
    vars f_PNDMV_filt and f_PNDMV_filt;
  enddef;
  def map between heart_effector_T_module and heart_effector_T for
    vars G_Ts and G_Ts;
    vars G_Tv and G_Tv;
    vars f_es_min and f_es_min;
    vars tau_Ts and tau_Ts;
    vars tau_Tv and tau_Tv;
    vars Delta_Ts and Delta_Ts;
    vars Delta_Tv and Delta_Tv;
    vars Delta_T and Delta_T;
    vars sigma_Ts and sigma_Ts;
    vars sigma_Tv and sigma_Tv;
  enddef;
  def map between heart_effector_Elv_module and heart_effector_Elv for
    vars sigma_Es and sigma_Es;
    vars G_Es and G_Es;
    vars f_es_min and f_es_min;
    vars Delta_Es and Delta_Es;
    vars tau_Es and tau_Es;
    vars sigma_Ev and sigma_Ev;
    vars G_Ev and G_Ev;
    vars Delta_Ev and Delta_Ev;
    vars tau_Ev and tau_Ev;
    vars Delta_Emax and Delta_Emax;
    vars scale and scale;
  enddef;
  def map between heart_effector_Erv_module and heart_effector_Erv for
    vars sigma_Es and sigma_Es;
    vars G_Es and G_Es;
    vars f_es_min and f_es_min;
    vars Delta_Es and Delta_Es;
    vars tau_Es and tau_Es;
    vars sigma_Ev and sigma_Ev;
    vars G_Ev and G_Ev;
    vars Delta_Ev and Delta_Ev;
    vars tau_Ev and tau_Ev;
    vars Delta_Emax and Delta_Emax;
    vars scale and scale;
  enddef;
  def map between peripheral_effector_arms_module and peripheral_effector_arms for
    vars sigma_Rsp and sigma_Rsp;
    vars G_Rsp and G_Rsp;
    vars f_es_min and f_es_min;
    vars Delta_Rsp and Delta_Rsp;
    vars tau_Rsp and tau_Rsp;
  enddef;
  def map between venous_volume_effector_lb_module and venous_volume_effector_lb for
    vars sigma_Vusv and sigma_Vusv;
    vars G_Vusv and G_Vusv;
    vars f_es_min and f_es_min;
    vars Delta_Vusv and Delta_Vusv;
    vars tau_Vusv and tau_Vusv;
  enddef;
enddef;
