def model CardiovascularSystem as
  def unit s2 as
    unit second {expo: 2};
  enddef;
  def unit Hz as
    unit second {expo: -1};
  enddef;
  def unit millis as
    unit second {pref: milli};
  enddef;
  def unit per_millis as
    unit millis {expo: -1};
  enddef;
  def unit mm as
    unit metre {pref: milli};
  enddef;
  def unit m2 as
    unit metre {expo: 2};
  enddef;
  def unit mm2 as
    unit metre {expo: 2, pref: milli};
  enddef;
  def unit m3 as
    unit metre {expo: 3};
  enddef;
  def unit m4 as
    unit metre {expo: 4};
  enddef;
  def unit mm3 as
    unit metre {expo: 3, pref: milli};
  enddef;
  def unit J_per_s as
    unit joule;
    unit second {expo: -1};
  enddef;
  def unit mol_per_s as
    unit mole;
    unit second {expo: -1};
  enddef;
  def unit mmol_per_s as
    unit mole {pref: milli};
    unit second {expo: -1};
  enddef;
  def unit umol_per_s as
    unit mole {pref: micro};
    unit second {expo: -1};
  enddef;
  def unit C_per_s as
    unit coulomb;
    unit second {expo: -1};
  enddef;
  def unit mC_per_s as
    unit coulomb {pref: milli};
    unit second {expo: -1};
  enddef;
  def unit uC_per_s as
    unit coulomb {pref: micro};
    unit second {expo: -1};
  enddef;
  def unit nC_per_s as
    unit coulomb {pref: nano};
    unit second {expo: -1};
  enddef;
  def unit Cm_per_millis as
    unit coulomb;
    unit metre;
    unit second {expo: -1, pref: milli};
  enddef;
  def unit m_per_s as
    unit metre;
    unit second {expo: -1};
  enddef;
  def unit mm_per_s as
    unit metre {pref: milli};
    unit second {expo: -1};
  enddef;
  def unit um_per_s as
    unit metre {pref: milli};
    unit second {expo: -1};
  enddef;
  def unit rad_per_s as
    unit radian;
    unit second {expo: -1};
  enddef;
  def unit m3_per_s as
    unit metre {expo: 3};
    unit second {expo: -1};
  enddef;
  def unit mL as
    unit litre {pref: milli};
  enddef;
  def unit per_milliL_s as
    unit litre {expo: -1, pref: milli};
    unit second {expo: -1};
  enddef;
  def unit s_per_m3 as
    unit second;
    unit metre {expo: -3};
  enddef;
  def unit s_per_milliV as
    unit second;
    unit volt {expo: -1, pref: milli};
  enddef;
  def unit s_per_millis as
    unit second;
    unit second {expo: -1, pref: milli};
  enddef;
  def unit millis_per_s as
    unit second {pref: milli};
    unit second {expo: -1};
  enddef;
  def unit mm3_per_s as
    unit metre {expo: 3, pref: milli};
    unit second {expo: -1};
  enddef;
  def unit l_per_s as
    unit litre;
    unit second {expo: -1};
  enddef;
  def unit per_ml_s as
    unit litre {expo: -1, pref: milli};
    unit second {expo: -1};
  enddef;
  def unit per_m3_s as
    unit metre {expo: -3};
    unit second {expo: -1};
  enddef;
  def unit J_per_mol as
    unit joule;
    unit mole {expo: -1};
  enddef;
  def unit J_per_kmol_K as
    unit joule;
    unit mole {expo: -1, pref: kilo};
    unit kelvin {expo: -1};
  enddef;
  def unit J_per_M as
    unit J_per_mol;
  enddef;
  def unit J_per_C as
    unit joule;
    unit coulomb {expo: -1};
  enddef;
  def unit J_per_C_s as
    unit joule;
    unit coulomb {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit J_per_m as
    unit joule;
    unit metre {expo: -1};
  enddef;
  def unit J_per_m3 as
    unit joule;
    unit metre {expo: -3};
  enddef;
  def unit mmHg as
    unit pascal {mult: 133.32};
  enddef;
  def unit per_mmHg as
    unit mmHg {expo: -1};
  enddef;
  def unit mmHg2 as
    unit mmHg {expo: 2};
  enddef;
  def unit Pa_per_mmHg as
    unit pascal;
    unit mmHg {expo: -1};
  enddef;
  def unit m3_per_J as
    unit joule {expo: -1};
    unit metre {expo: 3};
  enddef;
  def unit J_per_m3s as
    unit joule;
    unit metre {expo: -3};
    unit second {expo: -1};
  enddef;
  def unit m3_per_Js as
    unit joule {expo: -1};
    unit metre {expo: 3};
    unit second {expo: -1};
  enddef;
  def unit J2_per_m6 as
    unit joule {expo: 2};
    unit metre {expo: -6};
  enddef;
  def unit Js2_per_C2 as
    unit second {expo: 2};
    unit joule;
    unit coulomb {expo: -2};
  enddef;
  def unit Js2_per_mol2 as
    unit joule;
    unit second {expo: 2};
    unit mole {expo: -2};
  enddef;
  def unit Js_per_mol2 as
    unit joule;
    unit second;
    unit mole {expo: -2};
  enddef;
  def unit Js_per_C2 as
    unit joule;
    unit second;
    unit coulomb {expo: -2};
  enddef;
  def unit J_per_mol2 as
    unit joule;
    unit mole {expo: -2};
  enddef;
  def unit C2_per_J_s as
    unit coulomb {expo: 2};
    unit joule {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit J_per_C2 as
    unit joule;
    unit coulomb {expo: -2};
  enddef;
  def unit C2_per_J as
    unit joule;
    unit coulomb {expo: -2};
  enddef;
  def unit mol_per_m3 as
    unit mole;
    unit metre {expo: -3};
  enddef;
  def unit M as
    unit mole;
    unit litre {expo: -1};
  enddef;
  def unit mM as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit milliM as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit uM as
    unit mole {pref: micro};
    unit litre {expo: -1};
  enddef;
  def unit kg_per_m3 as
    unit kilogram;
    unit metre {expo: -3};
  enddef;
  def unit m3_per_kg as
    unit kilogram {expo: -1};
    unit metre {expo: 3};
  enddef;
  def unit per_m3 as
    unit metre {expo: -3};
  enddef;
  def unit mol_per_m2_s as
    unit mole;
    unit metre {expo: -2};
    unit second {expo: -1};
  enddef;
  def unit mM_m_per_s as
    unit mM;
    unit metre;
    unit second {expo: -1};
  enddef;
  def unit J_per_m2_s as
    unit joule;
    unit metre {expo: -2};
    unit second {expo: -1};
  enddef;
  def unit Js_per_m4 as
    unit joule;
    unit second;
    unit metre {expo: -4};
  enddef;
  def unit mM_per_s as
    unit mM;
    unit second {expo: -1};
  enddef;
  def unit per_s as
    unit second {expo: -1};
  enddef;
  def unit per_s2 as
    unit second {expo: -2};
  enddef;
  def unit per_mM_s as
    unit mM {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit m6_per_mol2_s as
    unit metre {expo: 6};
    unit mole {expo: -2};
    unit second {expo: -1};
  enddef;
  def unit m3_per_mol as
    unit metre {expo: 3};
    unit mole {expo: -1};
  enddef;
  def unit mol_per_m3_s as
    unit mole;
    unit metre {expo: -3};
    unit second {expo: -1};
  enddef;
  def unit per_mol as
    unit mole {expo: -1};
  enddef;
  def unit J_per_mol_K as
    unit joule;
    unit mole {expo: -1};
    unit kelvin {expo: -1};
  enddef;
  def unit m2_per_s as
    unit metre {expo: 2};
    unit second {expo: -1};
  enddef;
  def unit per_C as
    unit coulomb {expo: -1};
  enddef;
  def unit per_m as
    unit metre {expo: -1};
  enddef;
  def unit per_mM as
    unit mM {expo: -1};
  enddef;
  def unit Js2_per_m2 as
    unit joule;
    unit second {expo: 2};
    unit metre {expo: -2};
  enddef;
  def unit Js_per_m2 as
    unit joule;
    unit second;
    unit metre {expo: -2};
  enddef;
  def unit J_per_m2 as
    unit joule;
    unit metre {expo: -2};
  enddef;
  def unit m_per_s2 as
    unit metre;
    unit second {expo: -2};
  enddef;
  def unit rad_per_s2 as
    unit radian;
    unit second {expo: -2};
  enddef;
  def unit Js_per_m3 as
    unit joule;
    unit second;
    unit metre {expo: -3};
  enddef;
  def unit Js2_per_m5 as
    unit joule;
    unit second {expo: 2};
    unit metre {expo: -5};
  enddef;
  def unit m5_per_Js2 as
    unit joule {expo: -1};
    unit second {expo: -2};
    unit metre {expo: 5};
  enddef;
  def unit J_per_m6 as
    unit joule;
    unit metre {expo: -6};
  enddef;
  def unit m6_per_J as
    unit metre {expo: 6};
    unit joule {expo: -1};
  enddef;
  def unit m6_per_Js as
    unit metre {expo: 6};
    unit joule {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit mm6_per_J as
    unit metre {expo: 6, pref: milli};
    unit joule {expo: -1};
  enddef;
  def unit Js2_per_m9 as
    unit joule;
    unit second {expo: 2};
    unit metre {expo: -9};
  enddef;
  def unit m6s_per_J as
    unit second;
    unit metre {expo: 6};
    unit joule {expo: -1};
  enddef;
  def unit Js_per_m6 as
    unit joule;
    unit second;
    unit metre {expo: -6};
  enddef;
  def unit Js2_per_m6 as
    unit joule;
    unit second {expo: 2};
    unit metre {expo: -6};
  enddef;
  def unit m3_per_s2 as
    unit metre {expo: 3};
    unit second {expo: -2};
  enddef;
  def unit mm3_per_s2 as
    unit metre {expo: 3, pref: milli};
    unit second {expo: -2};
  enddef;
  def unit per_mm3 as
    unit metre {expo: -3, pref: milli};
  enddef;
  def unit UnitValve as
    unit metre {expo: 3};
    unit second {expo: -1};
    unit J_per_m3 {expo: -0.5};
  enddef;
  def unit J_per_m9 as
    unit joule;
    unit metre {expo: -9};
  enddef;
  def unit milliV as
    unit volt {pref: milli};
  enddef;
  def unit per_milliV as
    unit milliV {expo: -1};
  enddef;
  def unit millis_per_milliV as
    unit milliV {expo: -1};
    unit millis;
  enddef;
  def unit per_V as
    unit volt {expo: -1};
  enddef;
  def unit milliV_per_V as
    unit milliV;
    unit volt {expo: -1};
  enddef;
  def unit V_per_milliV as
    unit volt;
    unit milliV {expo: -1};
  enddef;
  def unit V_per_s as
    unit volt;
    unit second {expo: -1};
  enddef;
  def unit milliV_per_kiloV as
    unit volt {pref: milli};
    unit volt {expo: -1, pref: kilo};
  enddef;
  def unit V2 as
    unit volt {expo: 2};
  enddef;
  def unit milliV2 as
    unit volt {expo: 2, pref: milli};
  enddef;
  def unit millimol as
    unit mole {pref: milli};
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit per_millimolar as
    unit millimolar {expo: -1};
  enddef;
  def unit per_millimolar_s as
    unit millimolar {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit per_millimolar2_s as
    unit millimolar {expo: -2};
    unit second {expo: -1};
  enddef;
  def unit millimolar_per_s as
    unit millimolar;
    unit second {expo: -1};
  enddef;
  def unit millimolar_per_megamolar as
    unit millimolar;
    unit mole {expo: -1, pref: mega};
    unit litre;
  enddef;
  def unit per_millimol_milliS as
    unit mole {expo: -1, pref: milli};
    unit siemens {expo: -1, pref: milli};
  enddef;
  def unit per_millimol_millis as
    unit mole {expo: -1, pref: milli};
    unit second {expo: -1, pref: milli};
  enddef;
  def unit per_millimol_s as
    unit mole {expo: -1, pref: milli};
    unit second {expo: -1};
  enddef;
  def unit microm as
    unit metre {pref: micro};
  enddef;
  def unit microS as
    unit siemens {pref: micro};
  enddef;
  def unit microm3 as
    unit microm {expo: 3};
  enddef;
  def unit m3_per_microm3 as
    unit m3;
    unit microm3 {expo: -1};
  enddef;
  def unit picoF as
    unit farad {pref: pico};
  enddef;
  def unit S_per_F as
    unit siemens;
    unit farad {expo: -1};
  enddef;
  def unit m3_per_Fs as
    unit metre {expo: 3};
    unit farad {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit A_per_F as
    unit ampere;
    unit farad {expo: -1};
  enddef;
  def unit megaOhm as
    unit ohm {pref: mega};
  enddef;
  def unit nanoA as
    unit ampere {pref: nano};
  enddef;
  def unit nanoA_per_milliA as
    unit ampere {pref: nano};
    unit ampere {expo: -1, pref: milli};
  enddef;
  def unit nanoA_per_A as
    unit ampere {pref: nano};
    unit ampere {expo: -1};
  enddef;
  def unit A_per_nanoA as
    unit ampere {expo: -1, pref: nano};
    unit ampere;
  enddef;
  def unit C_per_mol as
    unit coulomb;
    unit mole {expo: -1};
  enddef;
  def unit m3_per_J_millis as
    unit metre {expo: 3};
    unit joule {expo: -1};
    unit second {expo: -1, pref: milli};
  enddef;
  def unit m3_per_mol_millis as
    unit metre {expo: 3};
    unit mole {expo: -1};
    unit second {expo: -1, pref: milli};
  enddef;
  def unit m3_per_millimol_s as
    unit metre {expo: 3};
    unit second {expo: -1};
    unit mole {expo: -1, pref: milli};
  enddef;
  def unit millimol_per_m3 as
    unit metre {expo: -3};
    unit mole {pref: milli};
  enddef;
  def unit Hz2 as
    unit second {expo: -2};
  enddef;
  def unit cm as
    unit metre {pref: centi};
  enddef;
  def unit J_per_m4_s as
    unit metre {expo: -4};
    unit joule;
    unit second {expo: -1};
  enddef;
  def unit m3_per_mol_per_sec as
    unit metre {expo: 3};
    unit mole {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit mol_per_m3_per_kPa as
    unit mole;
    unit metre {expo: -3};
    unit pascal {expo: -1, pref: kilo};
  enddef;
  def unit mol_per_m3_per_Pa as
    unit mole;
    unit metre {expo: -3};
    unit pascal {expo: -1};
  enddef;
  def unit m3_per_mol_per_s as
    unit metre {expo: 3};
    unit mole {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit mol_per_m3_per_s as
    unit mole;
    unit metre {expo: -3};
    unit second {expo: -1};
  enddef;
  def unit dim as
    unit dimensionless;
  enddef;
  def unit fmol as
    unit mole {pref: femto};
  enddef;
  def unit per_fmol as
    unit fmol {expo: -1};
  enddef;
  def unit nJ_per_s as
    unit joule {pref: nano};
    unit second {expo: -1};
  enddef;
  def unit fmol_per_s as
    unit fmol;
    unit second {expo: -1};
  enddef;
  def unit nC_per_fmol as
    unit coulomb {pref: nano};
    unit fmol {expo: -1};
  enddef;
  def unit nC as
    unit coulomb {pref: nano};
  enddef;
  def unit nJ_per_fmol as
    unit joule {pref: nano};
    unit fmol {expo: -1};
  enddef;
  def unit nJ_per_nC as
    unit joule {pref: nano};
    unit nC {expo: -1};
  enddef;
  def unit fC as
    unit coulomb {pref: femto};
  enddef;
  def unit fF as
    unit farad {pref: femto};
  enddef;
  def unit volt_per_sec as
    unit second {expo: -1};
    unit volt;
  enddef;
  def unit J_per_K_per_mol as
    unit joule;
    unit kelvin {expo: -1};
    unit mole {expo: -1};
  enddef;
  def unit nS as
    unit siemens {pref: nano};
  enddef;
  def unit nSmV as
    unit nS;
    unit mV;
  enddef;
  def unit per_ms as
    unit second {expo: -1, pref: milli};
  enddef;
  def unit mM4 as
    unit mM {expo: 4};
  enddef;
  def unit mM_per_ms as
    unit mM;
    unit ms {expo: -1};
  enddef;
  def unit mMms as
    unit mM;
    unit ms;
  enddef;
  def unit per_mMms as
    unit mMms {expo: -1};
  enddef;
  def unit molar as
    unit mole;
    unit litre {expo: -1};
  enddef;
  def unit micromolar as
    unit mole {pref: micro};
    unit litre {expo: -1};
  enddef;
  def unit nanomolar as
    unit mole {pref: nano};
    unit litre {expo: -1};
  enddef;
  def unit ms as
    unit second {pref: milli};
  enddef;
  def unit m_cubed as
    unit metre {pref: kilo};
  enddef;
  def unit mV as
    unit volt {pref: milli};
  enddef;
  def unit m_cubed_per_second as
    unit m_cubed;
    unit per_s;
  enddef;
  def unit micromolar_m_cubed as
    unit micromolar;
    unit m_cubed;
  enddef;
  def unit C as
    unit ampere;
    unit second;
  enddef;
  def unit C_per_millimol as
    unit C;
    unit mole {expo: -1, pref: milli};
  enddef;
  def unit picoA as
    unit ampere {pref: pico};
  enddef;
  def unit picoA_per_nanoA as
    unit ampere {pref: pico};
    unit ampere {expo: -1, pref: nano};
  enddef;
  def unit picoA_per_picoFarad as
    unit picoA;
    unit picoFarad {expo: -1};
  enddef;
  def unit microL as
    unit litre {pref: micro};
  enddef;
  def unit picoFarad as
    unit farad {pref: pico};
  enddef;
  def unit cm3_per_second as
    unit metre {expo: 3, pref: centi};
    unit second {expo: -1};
  enddef;
  def unit um3_per_second as
    unit metre {expo: 3, pref: micro};
    unit second {expo: -1};
  enddef;
  def unit m3mM as
    unit metre {expo: 3};
    unit mM;
  enddef;
  def unit ms2 as
    unit ms {expo: 2};
  enddef;
  def unit nM3_per_ps as
    unit metre {expo: 3, pref: nano};
    unit second {expo: -1, pref: pico};
  enddef;
  def unit per_s_squared_m_cubed as
    unit second {expo: -2};
    unit metre {expo: -3};
  enddef;
  def unit per_meters_cubed as
    unit metre {expo: -3};
  enddef;
  def unit umeter3 as
    unit metre {expo: 3, pref: micro};
  enddef;
  def unit mill1 as
    unit volt {expo: -1};
    unit volt {pref: milli};
  enddef;
  def unit picoV as
    unit volt {pref: pico};
  enddef;
  def unit pic0 as
    unit volt {expo: -1};
    unit picoV;
  enddef;
  def unit nanoV as
    unit volt {pref: nano};
  enddef;
  def unit nan0 as
    unit volt {expo: -1};
    unit nanoV;
  enddef;
  def unit kPa as
    unit pascal {pref: kilo};
  enddef;
  def unit L_per_s as
    unit metre {expo: 3, pref: deci};
    unit second {expo: -1};
  enddef;
  def unit L_per_s_per_kPa as
    unit metre {expo: 3, pref: deci};
    unit second {expo: -1};
    unit pascal {expo: -1, pref: kilo};
  enddef;
  def unit kPa_per_L as
    unit pascal {pref: kilo};
    unit metre {expo: -3, pref: deci};
  enddef;
  def unit L_per_kPa as
    unit metre {expo: 3, pref: deci};
    unit pascal {expo: -1, pref: kilo};
  enddef;
  def unit kPa_s_per_L as
    unit pascal {pref: kilo};
    unit second;
    unit metre {expo: -3, pref: deci};
  enddef;
  def unit mol_per_L as
    unit mole;
    unit litre {expo: -1};
  enddef;
  def unit L_per_mol as
    unit litre;
    unit mole {expo: -1};
  enddef;
  def unit minute as
    unit second {mult: 60};
  enddef;
  def unit umol as
    unit mole {pref: micro};
  enddef;
  def unit per_umol as
    unit umol {expo: -1};
  enddef;
  def unit umol_per_minute as
    unit umol;
    unit minute {expo: -1};
  enddef;
  def unit J_per_umol as
    unit joule;
    unit umol {expo: -1};
  enddef;
  def unit per_minute as
    unit minute {expo: -1};
  enddef;
  def unit per_minute_umol as
    unit minute {expo: -1};
    unit umol {expo: -1};
  enddef;
  def unit umolar as
    unit mole {pref: micro};
    unit litre {expo: -1};
  enddef;
  def unit per_umolar as
    unit umolar {expo: -1};
  enddef;
  def unit umolar_per_minute as
    unit umolar;
    unit minute {expo: -1};
  enddef;
  def unit J_per_umolar as
    unit joule;
    unit umolar {expo: -1};
  enddef;
  def unit per_minute_umolar as
    unit minute {expo: -1};
    unit umolar {expo: -1};
  enddef;
  def unit L_per_m3 as
    unit litre;
    unit metre {expo: -3};
  enddef;
  def unit pH as
    unit dimensionless;
  enddef;
  def unit Celsius as
    unit kelvin;
  enddef;
  def unit Celsius_1 as
    unit Celsius {expo: -1};
  enddef;
  def unit Celsius_2 as
    unit Celsius {expo: -2};
  enddef;

  def comp parameters as
    var u_0_aortic_arch_I: J_per_m3 {init: 10000, interface: public};
    var theta_aortic_arch_I: dimensionless {init: 0, interface: public};
    var l_aortic_arch_I: metre {init: 0.074413765495, interface: public};
    var r_0_aortic_arch_I: metre {init: 0.0144512199325, interface: public};
    var m_tube_aortic_arch_I: dimensionless {init: 0.5, interface: public};
    var n_tube_aortic_arch_I: dimensionless {init: 0, interface: public};
    var I_scale_aortic_arch_I: dimensionless {init: 1, interface: public};
    var u_ext_aortic_arch_I: J_per_m3 {init: 0, interface: public};
    var u_0_brachiocephalic_trunk: J_per_m3 {init: 10000, interface: public};
    var theta_brachiocephalic_trunk: dimensionless {init: 0, interface: public};
    var l_brachiocephalic_trunk: metre {init: 0.047351277755, interface: public};
    var r_0_brachiocephalic_trunk: metre {init: 0.006443415, interface: public};
    var m_tube_brachiocephalic_trunk: dimensionless {init: 0.5, interface: public};
    var n_tube_brachiocephalic_trunk: dimensionless {init: 0, interface: public};
    var I_scale_brachiocephalic_trunk: dimensionless {init: 1, interface: public};
    var u_ext_brachiocephalic_trunk: J_per_m3 {init: 0, interface: public};
    var u_0_aortic_arch_II: J_per_m3 {init: 10000, interface: public};
    var theta_aortic_arch_II: dimensionless {init: 0, interface: public};
    var l_aortic_arch_II: metre {init: 0.009603836388, interface: public};
    var r_0_aortic_arch_II: metre {init: 0.012759007397, interface: public};
    var m_tube_aortic_arch_II: dimensionless {init: 0.5, interface: public};
    var n_tube_aortic_arch_II: dimensionless {init: 0, interface: public};
    var I_scale_aortic_arch_II: dimensionless {init: 1, interface: public};
    var u_ext_aortic_arch_II: J_per_m3 {init: 0, interface: public};
    var u_0_subclavian_R_I: J_per_m3 {init: 10000, interface: public};
    var theta_subclavian_R_I: dimensionless {init: 0, interface: public};
    var l_subclavian_R_I: metre {init: 0.015740629027, interface: public};
    var r_0_subclavian_R_I: metre {init: 0.004536488852, interface: public};
    var m_tube_subclavian_R_I: dimensionless {init: 0.5, interface: public};
    var n_tube_subclavian_R_I: dimensionless {init: 0, interface: public};
    var I_scale_subclavian_R_I: dimensionless {init: 1, interface: public};
    var u_ext_subclavian_R_I: J_per_m3 {init: 0, interface: public};
    var u_0_common_carotid_R: J_per_m3 {init: 10000, interface: public};
    var theta_common_carotid_R: dimensionless {init: 0, interface: public};
    var l_common_carotid_R: metre {init: 0.081219358067, interface: public};
    var r_0_common_carotid_R: metre {init: 0.003900915, interface: public};
    var m_tube_common_carotid_R: dimensionless {init: 0.5, interface: public};
    var n_tube_common_carotid_R: dimensionless {init: 0, interface: public};
    var I_scale_common_carotid_R: dimensionless {init: 1, interface: public};
    var u_ext_common_carotid_R: J_per_m3 {init: 0, interface: public};
    var theta_vertebral_R: dimensionless {init: 0, interface: public};
    var l_vertebral_R: metre {init: 0.204453188261, interface: public};
    var r_0_vertebral_R: metre {init: 0.00133527, interface: public};
    var u_0_vertebral_R: J_per_m3 {init: 10000, interface: public};
    var m_tube_vertebral_R: dimensionless {init: 0.5, interface: public};
    var n_tube_vertebral_R: dimensionless {init: 0, interface: public};
    var I_scale_vertebral_R: dimensionless {init: 1, interface: public};
    var u_ext_vertebral_R: J_per_m3 {init: 0, interface: public};
    var theta_subclavian_R_II: dimensionless {init: 0, interface: public};
    var l_subclavian_R_II: metre {init: 0.041118782084, interface: public};
    var r_0_subclavian_R_II: metre {init: 0.003239173852, interface: public};
    var u_0_subclavian_R_II: J_per_m3 {init: 10000, interface: public};
    var m_tube_subclavian_R_II: dimensionless {init: 0.5, interface: public};
    var n_tube_subclavian_R_II: dimensionless {init: 0, interface: public};
    var I_scale_subclavian_R_II: dimensionless {init: 1, interface: public};
    var u_ext_subclavian_R_II: J_per_m3 {init: 0, interface: public};
    var theta_axillary_R: dimensionless {init: 0, interface: public};
    var l_axillary_R: metre {init: 0.12000204811, interface: public};
    var r_0_axillary_R: metre {init: 0.002189, interface: public};
    var u_0_axillary_R: J_per_m3 {init: 10000, interface: public};
    var m_tube_axillary_R: dimensionless {init: 0.5, interface: public};
    var n_tube_axillary_R: dimensionless {init: 0, interface: public};
    var I_scale_axillary_R: dimensionless {init: 1, interface: public};
    var u_ext_axillary_R: J_per_m3 {init: 0, interface: public};
    var u_0_brachial_R: J_per_m3 {init: 10000, interface: public};
    var theta_brachial_R: dimensionless {init: 0, interface: public};
    var l_brachial_R: metre {init: 0.223108204635, interface: public};
    var r_0_brachial_R: metre {init: 0.001952635, interface: public};
    var m_tube_brachial_R: dimensionless {init: 0.5, interface: public};
    var n_tube_brachial_R: dimensionless {init: 0, interface: public};
    var I_scale_brachial_R: dimensionless {init: 1, interface: public};
    var u_ext_brachial_R: J_per_m3 {init: 0, interface: public};
    var theta_radial_R: dimensionless {init: 0, interface: public};
    var l_radial_R: metre {init: 0.300885766109, interface: public};
    var r_0_radial_R: metre {init: 0.001378, interface: public};
    var u_0_radial_R: J_per_m3 {init: 10000, interface: public};
    var m_tube_radial_R: dimensionless {init: 0.5, interface: public};
    var n_tube_radial_R: dimensionless {init: 0, interface: public};
    var I_scale_radial_R: dimensionless {init: 1, interface: public};
    var u_ext_radial_R: J_per_m3 {init: 0, interface: public};
    var u_0_ulnar_R_I: J_per_m3 {init: 10000, interface: public};
    var theta_ulnar_R_I: dimensionless {init: 0, interface: public};
    var l_ulnar_R_I: metre {init: 0.029756240754, interface: public};
    var r_0_ulnar_R_I: metre {init: 0.001408, interface: public};
    var m_tube_ulnar_R_I: dimensionless {init: 0.5, interface: public};
    var n_tube_ulnar_R_I: dimensionless {init: 0, interface: public};
    var I_scale_ulnar_R_I: dimensionless {init: 1, interface: public};
    var u_ext_ulnar_R_I: J_per_m3 {init: 0, interface: public};
    var theta_common_interosseous_R: dimensionless {init: 0, interface: public};
    var l_common_interosseous_R: metre {init: 0.016266065799, interface: public};
    var r_0_common_interosseous_R: metre {init: 0.000959, interface: public};
    var u_0_common_interosseous_R: J_per_m3 {init: 10000, interface: public};
    var m_tube_common_interosseous_R: dimensionless {init: 0.5, interface: public};
    var n_tube_common_interosseous_R: dimensionless {init: 0, interface: public};
    var I_scale_common_interosseous_R: dimensionless {init: 1, interface: public};
    var u_ext_common_interosseous_R: J_per_m3 {init: 0, interface: public};
    var theta_ulnar_R_II: dimensionless {init: 0, interface: public};
    var l_ulnar_R_II: metre {init: 0.239261629581, interface: public};
    var r_0_ulnar_R_II: metre {init: 0.001408, interface: public};
    var u_0_ulnar_R_II: J_per_m3 {init: 10000, interface: public};
    var m_tube_ulnar_R_II: dimensionless {init: 0.5, interface: public};
    var n_tube_ulnar_R_II: dimensionless {init: 0, interface: public};
    var I_scale_ulnar_R_II: dimensionless {init: 1, interface: public};
    var u_ext_ulnar_R_II: J_per_m3 {init: 0, interface: public};
    var theta_posterior_interosseous_R: dimensionless {init: 0, interface: public};
    var l_posterior_interosseous_R: metre {init: 0.230561368515, interface: public};
    var r_0_posterior_interosseous_R: metre {init: 0.000676, interface: public};
    var u_0_posterior_interosseous_R: J_per_m3 {init: 10000, interface: public};
    var m_tube_posterior_interosseous_R: dimensionless {init: 0.5, interface: public};
    var n_tube_posterior_interosseous_R: dimensionless {init: 0, interface: public};
    var I_scale_posterior_interosseous_R: dimensionless {init: 1, interface: public};
    var u_ext_posterior_interosseous_R: J_per_m3 {init: 0, interface: public};
    var theta_external_carotid_R: dimensionless {init: 0, interface: public};
    var l_external_carotid_R: metre {init: 0.06089687742, interface: public};
    var r_0_external_carotid_R: metre {init: 0.00226547, interface: public};
    var u_0_external_carotid_R: J_per_m3 {init: 10000, interface: public};
    var m_tube_external_carotid_R: dimensionless {init: 0.5, interface: public};
    var n_tube_external_carotid_R: dimensionless {init: 0, interface: public};
    var I_scale_external_carotid_R: dimensionless {init: 1, interface: public};
    var u_ext_external_carotid_R: J_per_m3 {init: 0, interface: public};
    var theta_internal_carotid_R: dimensionless {init: 0, interface: public};
    var l_internal_carotid_R: metre {init: 0.132109962786, interface: public};
    var r_0_internal_carotid_R: metre {init: 0.00276538, interface: public};
    var u_0_internal_carotid_R: J_per_m3 {init: 10000, interface: public};
    var m_tube_internal_carotid_R: dimensionless {init: 0.5, interface: public};
    var n_tube_internal_carotid_R: dimensionless {init: 0, interface: public};
    var I_scale_internal_carotid_R: dimensionless {init: 1, interface: public};
    var u_ext_internal_carotid_R: J_per_m3 {init: 0, interface: public};
    var u_0_common_carotid_L: J_per_m3 {init: 10000, interface: public};
    var theta_common_carotid_L: dimensionless {init: 0, interface: public};
    var l_common_carotid_L: metre {init: 0.121319039241, interface: public};
    var r_0_common_carotid_L: metre {init: 0.003900915, interface: public};
    var m_tube_common_carotid_L: dimensionless {init: 0.5, interface: public};
    var n_tube_common_carotid_L: dimensionless {init: 0, interface: public};
    var I_scale_common_carotid_L: dimensionless {init: 1, interface: public};
    var u_ext_common_carotid_L: J_per_m3 {init: 0, interface: public};
    var u_0_aortic_arch_III: J_per_m3 {init: 10000, interface: public};
    var theta_aortic_arch_III: dimensionless {init: 0, interface: public};
    var l_aortic_arch_III: metre {init: 0.006978531332, interface: public};
    var r_0_aortic_arch_III: metre {init: 0.012425019167, interface: public};
    var m_tube_aortic_arch_III: dimensionless {init: 0.5, interface: public};
    var n_tube_aortic_arch_III: dimensionless {init: 0, interface: public};
    var I_scale_aortic_arch_III: dimensionless {init: 1, interface: public};
    var u_ext_aortic_arch_III: J_per_m3 {init: 0, interface: public};
    var theta_external_carotid_L: dimensionless {init: 0, interface: public};
    var l_external_carotid_L: metre {init: 0.060897059943, interface: public};
    var r_0_external_carotid_L: metre {init: 0.00226547, interface: public};
    var u_0_external_carotid_L: J_per_m3 {init: 10000, interface: public};
    var m_tube_external_carotid_L: dimensionless {init: 0.5, interface: public};
    var n_tube_external_carotid_L: dimensionless {init: 0, interface: public};
    var I_scale_external_carotid_L: dimensionless {init: 1, interface: public};
    var u_ext_external_carotid_L: J_per_m3 {init: 0, interface: public};
    var theta_internal_carotid_L: dimensionless {init: 0, interface: public};
    var l_internal_carotid_L: metre {init: 0.132110383494, interface: public};
    var r_0_internal_carotid_L: metre {init: 0.00276538, interface: public};
    var u_0_internal_carotid_L: J_per_m3 {init: 10000, interface: public};
    var m_tube_internal_carotid_L: dimensionless {init: 0.5, interface: public};
    var n_tube_internal_carotid_L: dimensionless {init: 0, interface: public};
    var I_scale_internal_carotid_L: dimensionless {init: 1, interface: public};
    var u_ext_internal_carotid_L: J_per_m3 {init: 0, interface: public};
    var u_0_subclavian_L_I: J_per_m3 {init: 10000, interface: public};
    var theta_subclavian_L_I: dimensionless {init: 0, interface: public};
    var l_subclavian_L_I: metre {init: 0.049384125272, interface: public};
    var r_0_subclavian_L_I: metre {init: 0.004187732695, interface: public};
    var m_tube_subclavian_L_I: dimensionless {init: 0.5, interface: public};
    var n_tube_subclavian_L_I: dimensionless {init: 0, interface: public};
    var I_scale_subclavian_L_I: dimensionless {init: 1, interface: public};
    var u_ext_subclavian_L_I: J_per_m3 {init: 0, interface: public};
    var theta_aortic_arch_IV: dimensionless {init: 0, interface: public};
    var l_aortic_arch_IV: metre {init: 0.043057670133, interface: public};
    var r_0_aortic_arch_IV: metre {init: 0.0114172317025, interface: public};
    var u_0_aortic_arch_IV: J_per_m3 {init: 10000, interface: public};
    var m_tube_aortic_arch_IV: dimensionless {init: 0.5, interface: public};
    var n_tube_aortic_arch_IV: dimensionless {init: 0, interface: public};
    var I_scale_aortic_arch_IV: dimensionless {init: 1, interface: public};
    var u_ext_aortic_arch_IV: J_per_m3 {init: 0, interface: public};
    var theta_vertebral_L: dimensionless {init: 0, interface: public};
    var l_vertebral_L: metre {init: 0.204153808747, interface: public};
    var r_0_vertebral_L: metre {init: 0.00133527, interface: public};
    var u_0_vertebral_L: J_per_m3 {init: 10000, interface: public};
    var m_tube_vertebral_L: dimensionless {init: 0.5, interface: public};
    var n_tube_vertebral_L: dimensionless {init: 0, interface: public};
    var I_scale_vertebral_L: dimensionless {init: 1, interface: public};
    var u_ext_vertebral_L: J_per_m3 {init: 0, interface: public};
    var theta_subclavian_L_II: dimensionless {init: 0, interface: public};
    var l_subclavian_L_II: metre {init: 0.041118785899, interface: public};
    var r_0_subclavian_L_II: metre {init: 0.002890417695, interface: public};
    var u_0_subclavian_L_II: J_per_m3 {init: 10000, interface: public};
    var m_tube_subclavian_L_II: dimensionless {init: 0.5, interface: public};
    var n_tube_subclavian_L_II: dimensionless {init: 0, interface: public};
    var I_scale_subclavian_L_II: dimensionless {init: 1, interface: public};
    var u_ext_subclavian_L_II: J_per_m3 {init: 0, interface: public};
    var theta_axillary_L: dimensionless {init: 0, interface: public};
    var l_axillary_L: metre {init: 0.120002137018, interface: public};
    var r_0_axillary_L: metre {init: 0.002189, interface: public};
    var u_0_axillary_L: J_per_m3 {init: 10000, interface: public};
    var m_tube_axillary_L: dimensionless {init: 0.5, interface: public};
    var n_tube_axillary_L: dimensionless {init: 0, interface: public};
    var I_scale_axillary_L: dimensionless {init: 1, interface: public};
    var u_ext_axillary_L: J_per_m3 {init: 0, interface: public};
    var u_0_brachial_L: J_per_m3 {init: 10000, interface: public};
    var theta_brachial_L: dimensionless {init: 0, interface: public};
    var l_brachial_L: metre {init: 0.2231087827, interface: public};
    var r_0_brachial_L: metre {init: 0.001952635, interface: public};
    var m_tube_brachial_L: dimensionless {init: 0.5, interface: public};
    var n_tube_brachial_L: dimensionless {init: 0, interface: public};
    var I_scale_brachial_L: dimensionless {init: 1, interface: public};
    var u_ext_brachial_L: J_per_m3 {init: 0, interface: public};
    var theta_radial_L: dimensionless {init: 0, interface: public};
    var l_radial_L: metre {init: 0.310884406105, interface: public};
    var r_0_radial_L: metre {init: 0.001378, interface: public};
    var u_0_radial_L: J_per_m3 {init: 10000, interface: public};
    var m_tube_radial_L: dimensionless {init: 0.5, interface: public};
    var n_tube_radial_L: dimensionless {init: 0, interface: public};
    var I_scale_radial_L: dimensionless {init: 1, interface: public};
    var u_ext_radial_L: J_per_m3 {init: 0, interface: public};
    var u_0_ulnar_L_I: J_per_m3 {init: 10000, interface: public};
    var theta_ulnar_L_I: dimensionless {init: 0, interface: public};
    var l_ulnar_L_I: metre {init: 0.029755789889, interface: public};
    var r_0_ulnar_L_I: metre {init: 0.001408, interface: public};
    var m_tube_ulnar_L_I: dimensionless {init: 0.5, interface: public};
    var n_tube_ulnar_L_I: dimensionless {init: 0, interface: public};
    var I_scale_ulnar_L_I: dimensionless {init: 1, interface: public};
    var u_ext_ulnar_L_I: J_per_m3 {init: 0, interface: public};
    var theta_common_interosseous_L: dimensionless {init: 0, interface: public};
    var l_common_interosseous_L: metre {init: 0.016266062673, interface: public};
    var r_0_common_interosseous_L: metre {init: 0.000959, interface: public};
    var u_0_common_interosseous_L: J_per_m3 {init: 10000, interface: public};
    var m_tube_common_interosseous_L: dimensionless {init: 0.5, interface: public};
    var n_tube_common_interosseous_L: dimensionless {init: 0, interface: public};
    var I_scale_common_interosseous_L: dimensionless {init: 1, interface: public};
    var u_ext_common_interosseous_L: J_per_m3 {init: 0, interface: public};
    var theta_ulnar_L_II: dimensionless {init: 0, interface: public};
    var l_ulnar_L_II: metre {init: 0.239262158888, interface: public};
    var r_0_ulnar_L_II: metre {init: 0.001408, interface: public};
    var u_0_ulnar_L_II: J_per_m3 {init: 10000, interface: public};
    var m_tube_ulnar_L_II: dimensionless {init: 0.5, interface: public};
    var n_tube_ulnar_L_II: dimensionless {init: 0, interface: public};
    var I_scale_ulnar_L_II: dimensionless {init: 1, interface: public};
    var u_ext_ulnar_L_II: J_per_m3 {init: 0, interface: public};
    var theta_posterior_interosseous_L: dimensionless {init: 0, interface: public};
    var l_posterior_interosseous_L: metre {init: 0.230562469653, interface: public};
    var r_0_posterior_interosseous_L: metre {init: 0.000676, interface: public};
    var u_0_posterior_interosseous_L: J_per_m3 {init: 10000, interface: public};
    var m_tube_posterior_interosseous_L: dimensionless {init: 0.5, interface: public};
    var n_tube_posterior_interosseous_L: dimensionless {init: 0, interface: public};
    var I_scale_posterior_interosseous_L: dimensionless {init: 1, interface: public};
    var u_ext_posterior_interosseous_L: J_per_m3 {init: 0, interface: public};
    var u_0_thoracic_aorta_I: J_per_m3 {init: 10000, interface: public};
    var theta_thoracic_aorta_I: dimensionless {init: 0, interface: public};
    var l_thoracic_aorta_I: metre {init: 0.009897081257, interface: public};
    var r_0_thoracic_aorta_I: metre {init: 0.0104569025195, interface: public};
    var m_tube_thoracic_aorta_I: dimensionless {init: 0.5, interface: public};
    var n_tube_thoracic_aorta_I: dimensionless {init: 0, interface: public};
    var I_scale_thoracic_aorta_I: dimensionless {init: 1, interface: public};
    var u_ext_thoracic_aorta_I: J_per_m3 {init: 0, interface: public};
    var theta_posterior_intercostal_T6_R: dimensionless {init: 0, interface: public};
    var l_posterior_intercostal_T6_R: metre {init: 0.196881098828, interface: public};
    var r_0_posterior_intercostal_T6_R: metre {init: 0.0014, interface: public};
    var u_0_posterior_intercostal_T6_R: J_per_m3 {init: 10000, interface: public};
    var m_tube_posterior_intercostal_T6_R: dimensionless {init: 0.5, interface: public};
    var n_tube_posterior_intercostal_T6_R: dimensionless {init: 0, interface: public};
    var I_scale_posterior_intercostal_T6_R: dimensionless {init: 1, interface: public};
    var u_ext_posterior_intercostal_T6_R: J_per_m3 {init: 0, interface: public};
    var u_0_thoracic_aorta_II: J_per_m3 {init: 10000, interface: public};
    var theta_thoracic_aorta_II: dimensionless {init: 0, interface: public};
    var l_thoracic_aorta_II: metre {init: 0.007880384409, interface: public};
    var r_0_thoracic_aorta_II: metre {init: 0.0102896777365, interface: public};
    var m_tube_thoracic_aorta_II: dimensionless {init: 0.5, interface: public};
    var n_tube_thoracic_aorta_II: dimensionless {init: 0, interface: public};
    var I_scale_thoracic_aorta_II: dimensionless {init: 1, interface: public};
    var u_ext_thoracic_aorta_II: J_per_m3 {init: 0, interface: public};
    var theta_posterior_intercostal_T6_L: dimensionless {init: 0, interface: public};
    var l_posterior_intercostal_T6_L: metre {init: 0.178030219964, interface: public};
    var r_0_posterior_intercostal_T6_L: metre {init: 0.0014, interface: public};
    var u_0_posterior_intercostal_T6_L: J_per_m3 {init: 10000, interface: public};
    var m_tube_posterior_intercostal_T6_L: dimensionless {init: 0.5, interface: public};
    var n_tube_posterior_intercostal_T6_L: dimensionless {init: 0, interface: public};
    var I_scale_posterior_intercostal_T6_L: dimensionless {init: 1, interface: public};
    var u_ext_posterior_intercostal_T6_L: J_per_m3 {init: 0, interface: public};
    var u_0_thoracic_aorta_III: J_per_m3 {init: 10000, interface: public};
    var theta_thoracic_aorta_III: dimensionless {init: 0, interface: public};
    var l_thoracic_aorta_III: metre {init: 0.015555917597, interface: public};
    var r_0_thoracic_aorta_III: metre {init: 0.0100692227745, interface: public};
    var m_tube_thoracic_aorta_III: dimensionless {init: 0.5, interface: public};
    var n_tube_thoracic_aorta_III: dimensionless {init: 0, interface: public};
    var I_scale_thoracic_aorta_III: dimensionless {init: 1, interface: public};
    var u_ext_thoracic_aorta_III: J_per_m3 {init: 0, interface: public};
    var theta_posterior_intercostal_T7_R: dimensionless {init: 0, interface: public};
    var l_posterior_intercostal_T7_R: metre {init: 0.201560344682, interface: public};
    var r_0_posterior_intercostal_T7_R: metre {init: 0.00155, interface: public};
    var u_0_posterior_intercostal_T7_R: J_per_m3 {init: 10000, interface: public};
    var m_tube_posterior_intercostal_T7_R: dimensionless {init: 0.5, interface: public};
    var n_tube_posterior_intercostal_T7_R: dimensionless {init: 0, interface: public};
    var I_scale_posterior_intercostal_T7_R: dimensionless {init: 1, interface: public};
    var u_ext_posterior_intercostal_T7_R: J_per_m3 {init: 0, interface: public};
    var u_0_thoracic_aorta_IV: J_per_m3 {init: 10000, interface: public};
    var theta_thoracic_aorta_IV: dimensionless {init: 0, interface: public};
    var l_thoracic_aorta_IV: metre {init: 0.005327048648, interface: public};
    var r_0_thoracic_aorta_IV: metre {init: 0.009872785917, interface: public};
    var m_tube_thoracic_aorta_IV: dimensionless {init: 0.5, interface: public};
    var n_tube_thoracic_aorta_IV: dimensionless {init: 0, interface: public};
    var I_scale_thoracic_aorta_IV: dimensionless {init: 1, interface: public};
    var u_ext_thoracic_aorta_IV: J_per_m3 {init: 0, interface: public};
    var theta_posterior_intercostal_T7_L: dimensionless {init: 0, interface: public};
    var l_posterior_intercostal_T7_L: metre {init: 0.185176241696, interface: public};
    var r_0_posterior_intercostal_T7_L: metre {init: 0.00155, interface: public};
    var u_0_posterior_intercostal_T7_L: J_per_m3 {init: 10000, interface: public};
    var m_tube_posterior_intercostal_T7_L: dimensionless {init: 0.5, interface: public};
    var n_tube_posterior_intercostal_T7_L: dimensionless {init: 0, interface: public};
    var I_scale_posterior_intercostal_T7_L: dimensionless {init: 1, interface: public};
    var u_ext_posterior_intercostal_T7_L: J_per_m3 {init: 0, interface: public};
    var theta_thoracic_aorta_V: dimensionless {init: 0, interface: public};
    var l_thoracic_aorta_V: metre {init: 0.121560746471, interface: public};
    var r_0_thoracic_aorta_V: metre {init: 0.0086792083595, interface: public};
    var u_0_thoracic_aorta_V: J_per_m3 {init: 10000, interface: public};
    var m_tube_thoracic_aorta_V: dimensionless {init: 0.5, interface: public};
    var n_tube_thoracic_aorta_V: dimensionless {init: 0, interface: public};
    var I_scale_thoracic_aorta_V: dimensionless {init: 1, interface: public};
    var u_ext_thoracic_aorta_V: J_per_m3 {init: 0, interface: public};
    var u_0_thoracic_aorta_VI: J_per_m3 {init: 10000, interface: public};
    var theta_thoracic_aorta_VI: dimensionless {init: 0, interface: public};
    var l_thoracic_aorta_VI: metre {init: 0.003247666735, interface: public};
    var r_0_thoracic_aorta_VI: metre {init: 0.0075153320675, interface: public};
    var m_tube_thoracic_aorta_VI: dimensionless {init: 0.5, interface: public};
    var n_tube_thoracic_aorta_VI: dimensionless {init: 0, interface: public};
    var I_scale_thoracic_aorta_VI: dimensionless {init: 1, interface: public};
    var u_ext_thoracic_aorta_VI: J_per_m3 {init: 0, interface: public};
    var u_0_celiac_trunk: J_per_m3 {init: 10000, interface: public};
    var theta_celiac_trunk: dimensionless {init: 0, interface: public};
    var l_celiac_trunk: metre {init: 0.016823833364, interface: public};
    var r_0_celiac_trunk: metre {init: 0.00328122, interface: public};
    var m_tube_celiac_trunk: dimensionless {init: 0.5, interface: public};
    var n_tube_celiac_trunk: dimensionless {init: 0, interface: public};
    var I_scale_celiac_trunk: dimensionless {init: 1, interface: public};
    var u_ext_celiac_trunk: J_per_m3 {init: 0, interface: public};
    var u_0_abdominal_aorta_I: J_per_m3 {init: 10000, interface: public};
    var theta_abdominal_aorta_I: dimensionless {init: 0, interface: public};
    var l_abdominal_aorta_I: metre {init: 0.013988434469, interface: public};
    var r_0_abdominal_aorta_I: metre {init: 0.007407022559, interface: public};
    var m_tube_abdominal_aorta_I: dimensionless {init: 0.5, interface: public};
    var n_tube_abdominal_aorta_I: dimensionless {init: 0, interface: public};
    var I_scale_abdominal_aorta_I: dimensionless {init: 1, interface: public};
    var u_ext_abdominal_aorta_I: J_per_m3 {init: 0, interface: public};
    var theta_common_hepatic: dimensionless {init: 0, interface: public};
    var l_common_hepatic: metre {init: 0.066554552251, interface: public};
    var r_0_common_hepatic: metre {init: 0.00268614, interface: public};
    var u_0_common_hepatic: J_per_m3 {init: 10000, interface: public};
    var m_tube_common_hepatic: dimensionless {init: 0.5, interface: public};
    var n_tube_common_hepatic: dimensionless {init: 0, interface: public};
    var I_scale_common_hepatic: dimensionless {init: 1, interface: public};
    var u_ext_common_hepatic: J_per_m3 {init: 0, interface: public};
    var u_0_splenic_I: J_per_m3 {init: 10000, interface: public};
    var theta_splenic_I: dimensionless {init: 0, interface: public};
    var l_splenic_I: metre {init: 0.003948745048, interface: public};
    var r_0_splenic_I: metre {init: 0.00216682, interface: public};
    var m_tube_splenic_I: dimensionless {init: 0.5, interface: public};
    var n_tube_splenic_I: dimensionless {init: 0, interface: public};
    var I_scale_splenic_I: dimensionless {init: 1, interface: public};
    var u_ext_splenic_I: J_per_m3 {init: 0, interface: public};
    var theta_left_gastric: dimensionless {init: 0, interface: public};
    var l_left_gastric: metre {init: 0.092866914136, interface: public};
    var r_0_left_gastric: metre {init: 0.00150666, interface: public};
    var u_0_left_gastric: J_per_m3 {init: 10000, interface: public};
    var m_tube_left_gastric: dimensionless {init: 0.5, interface: public};
    var n_tube_left_gastric: dimensionless {init: 0, interface: public};
    var I_scale_left_gastric: dimensionless {init: 1, interface: public};
    var u_ext_left_gastric: J_per_m3 {init: 0, interface: public};
    var theta_splenic_II: dimensionless {init: 0, interface: public};
    var l_splenic_II: metre {init: 0.064402741833, interface: public};
    var r_0_splenic_II: metre {init: 0.00216682, interface: public};
    var u_0_splenic_II: J_per_m3 {init: 10000, interface: public};
    var m_tube_splenic_II: dimensionless {init: 0.5, interface: public};
    var n_tube_splenic_II: dimensionless {init: 0, interface: public};
    var I_scale_splenic_II: dimensionless {init: 1, interface: public};
    var u_ext_splenic_II: J_per_m3 {init: 0, interface: public};
    var theta_superior_mesenteric: dimensionless {init: 0, interface: public};
    var l_superior_mesenteric: metre {init: 0.216398323794, interface: public};
    var r_0_superior_mesenteric: metre {init: 0.00392612, interface: public};
    var u_0_superior_mesenteric: J_per_m3 {init: 10000, interface: public};
    var m_tube_superior_mesenteric: dimensionless {init: 0.5, interface: public};
    var n_tube_superior_mesenteric: dimensionless {init: 0, interface: public};
    var I_scale_superior_mesenteric: dimensionless {init: 1, interface: public};
    var u_ext_superior_mesenteric: J_per_m3 {init: 0, interface: public};
    var u_0_abdominal_aorta_II: J_per_m3 {init: 10000, interface: public};
    var theta_abdominal_aorta_II: dimensionless {init: 0, interface: public};
    var l_abdominal_aorta_II: metre {init: 0.004319125635, interface: public};
    var r_0_abdominal_aorta_II: metre {init: 0.0072919801365, interface: public};
    var m_tube_abdominal_aorta_II: dimensionless {init: 0.5, interface: public};
    var n_tube_abdominal_aorta_II: dimensionless {init: 0, interface: public};
    var I_scale_abdominal_aorta_II: dimensionless {init: 1, interface: public};
    var u_ext_abdominal_aorta_II: J_per_m3 {init: 0, interface: public};
    var theta_renal_L: dimensionless {init: 0, interface: public};
    var l_renal_L: metre {init: 0.021836535023, interface: public};
    var r_0_renal_L: metre {init: 0.0027089, interface: public};
    var u_0_renal_L: J_per_m3 {init: 10000, interface: public};
    var m_tube_renal_L: dimensionless {init: 0.5, interface: public};
    var n_tube_renal_L: dimensionless {init: 0, interface: public};
    var I_scale_renal_L: dimensionless {init: 1, interface: public};
    var u_ext_renal_L: J_per_m3 {init: 0, interface: public};
    var u_0_abdominal_aorta_III: J_per_m3 {init: 10000, interface: public};
    var theta_abdominal_aorta_III: dimensionless {init: 0, interface: public};
    var l_abdominal_aorta_III: metre {init: 0.011977282679, interface: public};
    var r_0_abdominal_aorta_III: metre {init: 0.007189575541, interface: public};
    var m_tube_abdominal_aorta_III: dimensionless {init: 0.5, interface: public};
    var n_tube_abdominal_aorta_III: dimensionless {init: 0, interface: public};
    var I_scale_abdominal_aorta_III: dimensionless {init: 1, interface: public};
    var u_ext_abdominal_aorta_III: J_per_m3 {init: 0, interface: public};
    var theta_renal_R: dimensionless {init: 0, interface: public};
    var l_renal_R: metre {init: 0.037717424902, interface: public};
    var r_0_renal_R: metre {init: 0.00309737, interface: public};
    var u_0_renal_R: J_per_m3 {init: 10000, interface: public};
    var m_tube_renal_R: dimensionless {init: 0.5, interface: public};
    var n_tube_renal_R: dimensionless {init: 0, interface: public};
    var I_scale_renal_R: dimensionless {init: 1, interface: public};
    var u_ext_renal_R: J_per_m3 {init: 0, interface: public};
    var u_0_abdominal_aorta_IV: J_per_m3 {init: 10000, interface: public};
    var theta_abdominal_aorta_IV: dimensionless {init: 0, interface: public};
    var l_abdominal_aorta_IV: metre {init: 0.054089376627, interface: public};
    var r_0_abdominal_aorta_IV: metre {init: 0.006774420903, interface: public};
    var m_tube_abdominal_aorta_IV: dimensionless {init: 0.5, interface: public};
    var n_tube_abdominal_aorta_IV: dimensionless {init: 0, interface: public};
    var I_scale_abdominal_aorta_IV: dimensionless {init: 1, interface: public};
    var u_ext_abdominal_aorta_IV: J_per_m3 {init: 0, interface: public};
    var theta_inferior_mesenteric: dimensionless {init: 0, interface: public};
    var l_inferior_mesenteric: metre {init: 0.090238543542, interface: public};
    var r_0_inferior_mesenteric: metre {init: 0.00207748, interface: public};
    var u_0_inferior_mesenteric: J_per_m3 {init: 10000, interface: public};
    var m_tube_inferior_mesenteric: dimensionless {init: 0.5, interface: public};
    var n_tube_inferior_mesenteric: dimensionless {init: 0, interface: public};
    var I_scale_inferior_mesenteric: dimensionless {init: 1, interface: public};
    var u_ext_inferior_mesenteric: J_per_m3 {init: 0, interface: public};
    var u_0_abdominal_aorta_V: J_per_m3 {init: 10000, interface: public};
    var theta_abdominal_aorta_V: dimensionless {init: 0, interface: public};
    var l_abdominal_aorta_V: metre {init: 0.042224742038, interface: public};
    var r_0_abdominal_aorta_V: metre {init: 0.006169195007, interface: public};
    var m_tube_abdominal_aorta_V: dimensionless {init: 0.5, interface: public};
    var n_tube_abdominal_aorta_V: dimensionless {init: 0, interface: public};
    var I_scale_abdominal_aorta_V: dimensionless {init: 1, interface: public};
    var u_ext_abdominal_aorta_V: J_per_m3 {init: 0, interface: public};
    var u_0_common_iliac_R: J_per_m3 {init: 10000, interface: public};
    var theta_common_iliac_R: dimensionless {init: 0, interface: public};
    var l_common_iliac_R: metre {init: 0.076428563993, interface: public};
    var r_0_common_iliac_R: metre {init: 0.004294905, interface: public};
    var m_tube_common_iliac_R: dimensionless {init: 0.5, interface: public};
    var n_tube_common_iliac_R: dimensionless {init: 0, interface: public};
    var I_scale_common_iliac_R: dimensionless {init: 1, interface: public};
    var u_ext_common_iliac_R: J_per_m3 {init: 0, interface: public};
    var u_0_common_iliac_L: J_per_m3 {init: 10000, interface: public};
    var theta_common_iliac_L: dimensionless {init: 0, interface: public};
    var l_common_iliac_L: metre {init: 0.074038018352, interface: public};
    var r_0_common_iliac_L: metre {init: 0.004294905, interface: public};
    var m_tube_common_iliac_L: dimensionless {init: 0.5, interface: public};
    var n_tube_common_iliac_L: dimensionless {init: 0, interface: public};
    var I_scale_common_iliac_L: dimensionless {init: 1, interface: public};
    var u_ext_common_iliac_L: J_per_m3 {init: 0, interface: public};
    var theta_external_iliac_R: dimensionless {init: 0, interface: public};
    var l_external_iliac_R: metre {init: 0.102210634017, interface: public};
    var r_0_external_iliac_R: metre {init: 0.00328329, interface: public};
    var u_0_external_iliac_R: J_per_m3 {init: 10000, interface: public};
    var m_tube_external_iliac_R: dimensionless {init: 0.5, interface: public};
    var n_tube_external_iliac_R: dimensionless {init: 0, interface: public};
    var I_scale_external_iliac_R: dimensionless {init: 1, interface: public};
    var u_ext_external_iliac_R: J_per_m3 {init: 0, interface: public};
    var theta_internal_iliac_R: dimensionless {init: 0, interface: public};
    var l_internal_iliac_R: metre {init: 0.07250942087, interface: public};
    var r_0_internal_iliac_R: metre {init: 0.00281829, interface: public};
    var u_0_internal_iliac_R: J_per_m3 {init: 10000, interface: public};
    var m_tube_internal_iliac_R: dimensionless {init: 0.5, interface: public};
    var n_tube_internal_iliac_R: dimensionless {init: 0, interface: public};
    var I_scale_internal_iliac_R: dimensionless {init: 1, interface: public};
    var u_ext_internal_iliac_R: J_per_m3 {init: 0, interface: public};
    var u_0_femoral_R_I: J_per_m3 {init: 10000, interface: public};
    var theta_femoral_R_I: dimensionless {init: 0, interface: public};
    var l_femoral_R_I: metre {init: 0.031591224433, interface: public};
    var r_0_femoral_R_I: metre {init: 0.003166362461, interface: public};
    var m_tube_femoral_R_I: dimensionless {init: 0.5, interface: public};
    var n_tube_femoral_R_I: dimensionless {init: 0, interface: public};
    var I_scale_femoral_R_I: dimensionless {init: 1, interface: public};
    var u_ext_femoral_R_I: J_per_m3 {init: 0, interface: public};
    var theta_profunda_femoris_R: dimensionless {init: 0, interface: public};
    var l_profunda_femoris_R: metre {init: 0.238393724757, interface: public};
    var r_0_profunda_femoris_R: metre {init: 0.00214445, interface: public};
    var u_0_profunda_femoris_R: J_per_m3 {init: 10000, interface: public};
    var m_tube_profunda_femoris_R: dimensionless {init: 0.5, interface: public};
    var n_tube_profunda_femoris_R: dimensionless {init: 0, interface: public};
    var I_scale_profunda_femoris_R: dimensionless {init: 1, interface: public};
    var u_ext_profunda_femoris_R: J_per_m3 {init: 0, interface: public};
    var theta_femoral_R_II: dimensionless {init: 0, interface: public};
    var l_femoral_R_II: metre {init: 0.319285322895, interface: public};
    var r_0_femoral_R_II: metre {init: 0.002914932461, interface: public};
    var u_0_femoral_R_II: J_per_m3 {init: 10000, interface: public};
    var m_tube_femoral_R_II: dimensionless {init: 0.5, interface: public};
    var n_tube_femoral_R_II: dimensionless {init: 0, interface: public};
    var I_scale_femoral_R_II: dimensionless {init: 1, interface: public};
    var u_ext_femoral_R_II: J_per_m3 {init: 0, interface: public};
    var u_0_popliteal_R_I: J_per_m3 {init: 10000, interface: public};
    var theta_popliteal_R_I: dimensionless {init: 0, interface: public};
    var l_popliteal_R_I: metre {init: 0.132029022862, interface: public};
    var r_0_popliteal_R_I: metre {init: 0.002526909905, interface: public};
    var m_tube_popliteal_R_I: dimensionless {init: 0.5, interface: public};
    var n_tube_popliteal_R_I: dimensionless {init: 0, interface: public};
    var I_scale_popliteal_R_I: dimensionless {init: 1, interface: public};
    var u_ext_popliteal_R_I: J_per_m3 {init: 0, interface: public};
    var theta_anterior_tibial_R: dimensionless {init: 0, interface: public};
    var l_anterior_tibial_R: metre {init: 0.386215673348, interface: public};
    var r_0_anterior_tibial_R: metre {init: 0.0011663, interface: public};
    var u_0_anterior_tibial_R: J_per_m3 {init: 10000, interface: public};
    var m_tube_anterior_tibial_R: dimensionless {init: 0.5, interface: public};
    var n_tube_anterior_tibial_R: dimensionless {init: 0, interface: public};
    var I_scale_anterior_tibial_R: dimensionless {init: 1, interface: public};
    var u_ext_anterior_tibial_R: J_per_m3 {init: 0, interface: public};
    var theta_popliteal_R_II: dimensionless {init: 0, interface: public};
    var l_popliteal_R_II: metre {init: 0.008797428856, interface: public};
    var r_0_popliteal_R_II: metre {init: 0.002357069905, interface: public};
    var u_0_popliteal_R_II: J_per_m3 {init: 10000, interface: public};
    var m_tube_popliteal_R_II: dimensionless {init: 0.5, interface: public};
    var n_tube_popliteal_R_II: dimensionless {init: 0, interface: public};
    var I_scale_popliteal_R_II: dimensionless {init: 1, interface: public};
    var u_ext_popliteal_R_II: J_per_m3 {init: 0, interface: public};
    var theta_tibiofibular_trunk_R: dimensionless {init: 0, interface: public};
    var l_tibiofibular_trunk_R: metre {init: 0.036162676639, interface: public};
    var r_0_tibiofibular_trunk_R: metre {init: 0.00234646, interface: public};
    var u_0_tibiofibular_trunk_R: J_per_m3 {init: 10000, interface: public};
    var m_tube_tibiofibular_trunk_R: dimensionless {init: 0.5, interface: public};
    var n_tube_tibiofibular_trunk_R: dimensionless {init: 0, interface: public};
    var I_scale_tibiofibular_trunk_R: dimensionless {init: 1, interface: public};
    var u_ext_tibiofibular_trunk_R: J_per_m3 {init: 0, interface: public};
    var theta_posterior_tibial_R: dimensionless {init: 0, interface: public};
    var l_posterior_tibial_R: metre {init: 0.382884851572, interface: public};
    var r_0_posterior_tibial_R: metre {init: 0.00122936, interface: public};
    var u_0_posterior_tibial_R: J_per_m3 {init: 10000, interface: public};
    var m_tube_posterior_tibial_R: dimensionless {init: 0.5, interface: public};
    var n_tube_posterior_tibial_R: dimensionless {init: 0, interface: public};
    var I_scale_posterior_tibial_R: dimensionless {init: 1, interface: public};
    var u_ext_posterior_tibial_R: J_per_m3 {init: 0, interface: public};
    var theta_external_iliac_L: dimensionless {init: 0, interface: public};
    var l_external_iliac_L: metre {init: 0.102210679305, interface: public};
    var r_0_external_iliac_L: metre {init: 0.00328329, interface: public};
    var u_0_external_iliac_L: J_per_m3 {init: 10000, interface: public};
    var m_tube_external_iliac_L: dimensionless {init: 0.5, interface: public};
    var n_tube_external_iliac_L: dimensionless {init: 0, interface: public};
    var I_scale_external_iliac_L: dimensionless {init: 1, interface: public};
    var u_ext_external_iliac_L: J_per_m3 {init: 0, interface: public};
    var theta_internal_iliac_L: dimensionless {init: 0, interface: public};
    var l_internal_iliac_L: metre {init: 0.072509392407, interface: public};
    var r_0_internal_iliac_L: metre {init: 0.00281829, interface: public};
    var u_0_internal_iliac_L: J_per_m3 {init: 10000, interface: public};
    var m_tube_internal_iliac_L: dimensionless {init: 0.5, interface: public};
    var n_tube_internal_iliac_L: dimensionless {init: 0, interface: public};
    var I_scale_internal_iliac_L: dimensionless {init: 1, interface: public};
    var u_ext_internal_iliac_L: J_per_m3 {init: 0, interface: public};
    var u_0_femoral_L_I: J_per_m3 {init: 10000, interface: public};
    var theta_femoral_L_I: dimensionless {init: 0, interface: public};
    var l_femoral_L_I: metre {init: 0.031591223553, interface: public};
    var r_0_femoral_L_I: metre {init: 0.0031663624615, interface: public};
    var m_tube_femoral_L_I: dimensionless {init: 0.5, interface: public};
    var n_tube_femoral_L_I: dimensionless {init: 0, interface: public};
    var I_scale_femoral_L_I: dimensionless {init: 1, interface: public};
    var u_ext_femoral_L_I: J_per_m3 {init: 0, interface: public};
    var theta_profunda_femoris_L: dimensionless {init: 0, interface: public};
    var l_profunda_femoris_L: metre {init: 0.238393754787, interface: public};
    var r_0_profunda_femoris_L: metre {init: 0.00214445, interface: public};
    var u_0_profunda_femoris_L: J_per_m3 {init: 10000, interface: public};
    var m_tube_profunda_femoris_L: dimensionless {init: 0.5, interface: public};
    var n_tube_profunda_femoris_L: dimensionless {init: 0, interface: public};
    var I_scale_profunda_femoris_L: dimensionless {init: 1, interface: public};
    var u_ext_profunda_femoris_L: J_per_m3 {init: 0, interface: public};
    var theta_femoral_L_II: dimensionless {init: 0, interface: public};
    var l_femoral_L_II: metre {init: 0.319285318272, interface: public};
    var r_0_femoral_L_II: metre {init: 0.0029149324615, interface: public};
    var u_0_femoral_L_II: J_per_m3 {init: 10000, interface: public};
    var m_tube_femoral_L_II: dimensionless {init: 0.5, interface: public};
    var n_tube_femoral_L_II: dimensionless {init: 0, interface: public};
    var I_scale_femoral_L_II: dimensionless {init: 1, interface: public};
    var u_ext_femoral_L_II: J_per_m3 {init: 0, interface: public};
    var u_0_popliteal_L_I: J_per_m3 {init: 10000, interface: public};
    var theta_popliteal_L_I: dimensionless {init: 0, interface: public};
    var l_popliteal_L_I: metre {init: 0.132028085435, interface: public};
    var r_0_popliteal_L_I: metre {init: 0.0025269099235, interface: public};
    var m_tube_popliteal_L_I: dimensionless {init: 0.5, interface: public};
    var n_tube_popliteal_L_I: dimensionless {init: 0, interface: public};
    var I_scale_popliteal_L_I: dimensionless {init: 1, interface: public};
    var u_ext_popliteal_L_I: J_per_m3 {init: 0, interface: public};
    var theta_anterior_tibial_L: dimensionless {init: 0, interface: public};
    var l_anterior_tibial_L: metre {init: 0.386216405775, interface: public};
    var r_0_anterior_tibial_L: metre {init: 0.0011663, interface: public};
    var u_0_anterior_tibial_L: J_per_m3 {init: 10000, interface: public};
    var m_tube_anterior_tibial_L: dimensionless {init: 0.5, interface: public};
    var n_tube_anterior_tibial_L: dimensionless {init: 0, interface: public};
    var I_scale_anterior_tibial_L: dimensionless {init: 1, interface: public};
    var u_ext_anterior_tibial_L: J_per_m3 {init: 0, interface: public};
    var theta_popliteal_L_II: dimensionless {init: 0, interface: public};
    var l_popliteal_L_II: metre {init: 0.008797382358, interface: public};
    var r_0_popliteal_L_II: metre {init: 0.0023570699235, interface: public};
    var u_0_popliteal_L_II: J_per_m3 {init: 10000, interface: public};
    var m_tube_popliteal_L_II: dimensionless {init: 0.5, interface: public};
    var n_tube_popliteal_L_II: dimensionless {init: 0, interface: public};
    var I_scale_popliteal_L_II: dimensionless {init: 1, interface: public};
    var u_ext_popliteal_L_II: J_per_m3 {init: 0, interface: public};
    var theta_tibiofibular_trunk_L: dimensionless {init: 0, interface: public};
    var l_tibiofibular_trunk_L: metre {init: 0.03616364034, interface: public};
    var r_0_tibiofibular_trunk_L: metre {init: 0.00234646, interface: public};
    var u_0_tibiofibular_trunk_L: J_per_m3 {init: 10000, interface: public};
    var m_tube_tibiofibular_trunk_L: dimensionless {init: 0.5, interface: public};
    var n_tube_tibiofibular_trunk_L: dimensionless {init: 0, interface: public};
    var I_scale_tibiofibular_trunk_L: dimensionless {init: 1, interface: public};
    var u_ext_tibiofibular_trunk_L: J_per_m3 {init: 0, interface: public};
    var theta_posterior_tibial_L: dimensionless {init: 0, interface: public};
    var l_posterior_tibial_L: metre {init: 0.382884647627, interface: public};
    var r_0_posterior_tibial_L: metre {init: 0.00122936, interface: public};
    var u_0_posterior_tibial_L: J_per_m3 {init: 10000, interface: public};
    var m_tube_posterior_tibial_L: dimensionless {init: 0.5, interface: public};
    var n_tube_posterior_tibial_L: dimensionless {init: 0, interface: public};
    var I_scale_posterior_tibial_L: dimensionless {init: 1, interface: public};
    var u_ext_posterior_tibial_L: J_per_m3 {init: 0, interface: public};
    var R_T_external_carotid_R_T: Js_per_m6 {init: 4695404759.6, interface: public};
    var C_T_external_carotid_R_T: m6_per_J {init: 6.031649393e-11, interface: public};
    var q_us_external_carotid_R_T: m3 {init: 0, interface: public};
    var q_init_external_carotid_R_T: m3 {init: 0, interface: public};
    var u_ext_external_carotid_R_T: J_per_m3 {init: 0, interface: public};
    var u_out_external_carotid_R_T: J_per_m3 {init: 0, interface: public};
    var R_T_internal_carotid_R_T: Js_per_m6 {init: 2880079816.7, interface: public};
    var C_T_internal_carotid_R_T: m6_per_J {init: 9.833420276e-11, interface: public};
    var q_us_internal_carotid_R_T: m3 {init: 0, interface: public};
    var q_init_internal_carotid_R_T: m3 {init: 0, interface: public};
    var u_ext_internal_carotid_R_T: J_per_m3 {init: 0, interface: public};
    var u_out_internal_carotid_R_T: J_per_m3 {init: 0, interface: public};
    var R_T_vertebral_R_T: Js_per_m6 {init: 9052132312.4, interface: public};
    var C_T_vertebral_R_T: m6_per_J {init: 3.128659004e-11, interface: public};
    var q_us_vertebral_R_T: m3 {init: 0, interface: public};
    var q_init_vertebral_R_T: m3 {init: 0, interface: public};
    var u_ext_vertebral_R_T: J_per_m3 {init: 0, interface: public};
    var u_out_vertebral_R_T: J_per_m3 {init: 0, interface: public};
    var R_T_radial_R_T: Js_per_m6 {init: 5769404600.2, interface: public};
    var C_T_radial_R_T: m6_per_J {init: 4.90883154e-11, interface: public};
    var q_us_radial_R_T: m3 {init: 0, interface: public};
    var q_init_radial_R_T: m3 {init: 0, interface: public};
    var u_ext_radial_R_T: J_per_m3 {init: 0, interface: public};
    var u_out_radial_R_T: J_per_m3 {init: 0, interface: public};
    var R_T_posterior_interosseous_R_T: Js_per_m6 {init: 23906526401.6, interface: public};
    var C_T_posterior_interosseous_R_T: m6_per_J {init: 1.184657059e-11, interface: public};
    var q_us_posterior_interosseous_R_T: m3 {init: 0, interface: public};
    var q_init_posterior_interosseous_R_T: m3 {init: 0, interface: public};
    var u_ext_posterior_interosseous_R_T: J_per_m3 {init: 0, interface: public};
    var u_out_posterior_interosseous_R_T: J_per_m3 {init: 0, interface: public};
    var R_T_ulnar_R_II_T: Js_per_m6 {init: 5874318883.5, interface: public};
    var C_T_ulnar_R_II_T: m6_per_J {init: 4.821160687e-11, interface: public};
    var q_us_ulnar_R_II_T: m3 {init: 0, interface: public};
    var q_init_ulnar_R_II_T: m3 {init: 0, interface: public};
    var u_ext_ulnar_R_II_T: J_per_m3 {init: 0, interface: public};
    var u_out_ulnar_R_II_T: J_per_m3 {init: 0, interface: public};
    var R_T_external_carotid_L_T: Js_per_m6 {init: 4711952132.5, interface: public};
    var C_T_external_carotid_L_T: m6_per_J {init: 6.010467524e-11, interface: public};
    var q_us_external_carotid_L_T: m3 {init: 0, interface: public};
    var q_init_external_carotid_L_T: m3 {init: 0, interface: public};
    var u_ext_external_carotid_L_T: J_per_m3 {init: 0, interface: public};
    var u_out_external_carotid_L_T: J_per_m3 {init: 0, interface: public};
    var R_T_internal_carotid_L_T: Js_per_m6 {init: 2889699353.9, interface: public};
    var C_T_internal_carotid_L_T: m6_per_J {init: 9.800685746e-11, interface: public};
    var q_us_internal_carotid_L_T: m3 {init: 0, interface: public};
    var q_init_internal_carotid_L_T: m3 {init: 0, interface: public};
    var u_ext_internal_carotid_L_T: J_per_m3 {init: 0, interface: public};
    var u_out_internal_carotid_L_T: J_per_m3 {init: 0, interface: public};
    var R_T_vertebral_L_T: Js_per_m6 {init: 9621501502.2, interface: public};
    var C_T_vertebral_L_T: m6_per_J {init: 2.943515132e-11, interface: public};
    var q_us_vertebral_L_T: m3 {init: 0, interface: public};
    var q_init_vertebral_L_T: m3 {init: 0, interface: public};
    var u_ext_vertebral_L_T: J_per_m3 {init: 0, interface: public};
    var u_out_vertebral_L_T: J_per_m3 {init: 0, interface: public};
    var R_T_radial_L_T: Js_per_m6 {init: 5666090236.5, interface: public};
    var C_T_radial_L_T: m6_per_J {init: 4.998338199e-11, interface: public};
    var q_us_radial_L_T: m3 {init: 0, interface: public};
    var q_init_radial_L_T: m3 {init: 0, interface: public};
    var u_ext_radial_L_T: J_per_m3 {init: 0, interface: public};
    var u_out_radial_L_T: J_per_m3 {init: 0, interface: public};
    var R_T_posterior_interosseous_L_T: Js_per_m6 {init: 23993111146.1, interface: public};
    var C_T_posterior_interosseous_L_T: m6_per_J {init: 1.180381948e-11, interface: public};
    var q_us_posterior_interosseous_L_T: m3 {init: 0, interface: public};
    var q_init_posterior_interosseous_L_T: m3 {init: 0, interface: public};
    var u_ext_posterior_interosseous_L_T: J_per_m3 {init: 0, interface: public};
    var u_out_posterior_interosseous_L_T: J_per_m3 {init: 0, interface: public};
    var R_T_ulnar_L_II_T: Js_per_m6 {init: 5988131335.4, interface: public};
    var C_T_ulnar_L_II_T: m6_per_J {init: 4.729528075e-11, interface: public};
    var q_us_ulnar_L_II_T: m3 {init: 0, interface: public};
    var q_init_ulnar_L_II_T: m3 {init: 0, interface: public};
    var u_ext_ulnar_L_II_T: J_per_m3 {init: 0, interface: public};
    var u_out_ulnar_L_II_T: J_per_m3 {init: 0, interface: public};
    var R_T_posterior_intercostal_T6_R_T: Js_per_m6 {init: 124563461039.1, interface: public};
    var C_T_posterior_intercostal_T6_R_T: m6_per_J {init: 2.27362302e-12, interface: public};
    var q_us_posterior_intercostal_T6_R_T: m3 {init: 0, interface: public};
    var q_init_posterior_intercostal_T6_R_T: m3 {init: 0, interface: public};
    var u_ext_posterior_intercostal_T6_R_T: J_per_m3 {init: 0, interface: public};
    var u_out_posterior_intercostal_T6_R_T: J_per_m3 {init: 0, interface: public};
    var R_T_posterior_intercostal_T6_L_T: Js_per_m6 {init: 127791588033.4, interface: public};
    var C_T_posterior_intercostal_T6_L_T: m6_per_J {init: 2.21618932e-12, interface: public};
    var q_us_posterior_intercostal_T6_L_T: m3 {init: 0, interface: public};
    var q_init_posterior_intercostal_T6_L_T: m3 {init: 0, interface: public};
    var u_ext_posterior_intercostal_T6_L_T: J_per_m3 {init: 0, interface: public};
    var u_out_posterior_intercostal_T6_L_T: J_per_m3 {init: 0, interface: public};
    var R_T_posterior_intercostal_T7_R_T: Js_per_m6 {init: 116216854276.6, interface: public};
    var C_T_posterior_intercostal_T7_R_T: m6_per_J {init: 2.43691291e-12, interface: public};
    var q_us_posterior_intercostal_T7_R_T: m3 {init: 0, interface: public};
    var q_init_posterior_intercostal_T7_R_T: m3 {init: 0, interface: public};
    var u_ext_posterior_intercostal_T7_R_T: J_per_m3 {init: 0, interface: public};
    var u_out_posterior_intercostal_T7_R_T: J_per_m3 {init: 0, interface: public};
    var R_T_posterior_intercostal_T7_L_T: Js_per_m6 {init: 117212721362.1, interface: public};
    var C_T_posterior_intercostal_T7_L_T: m6_per_J {init: 2.41620832e-12, interface: public};
    var q_us_posterior_intercostal_T7_L_T: m3 {init: 0, interface: public};
    var q_init_posterior_intercostal_T7_L_T: m3 {init: 0, interface: public};
    var u_ext_posterior_intercostal_T7_L_T: J_per_m3 {init: 0, interface: public};
    var u_out_posterior_intercostal_T7_L_T: J_per_m3 {init: 0, interface: public};
    var R_T_common_hepatic_T: Js_per_m6 {init: 1674275481, interface: public};
    var C_T_common_hepatic_T: m6_per_J {init: 1.6915397489e-10, interface: public};
    var q_us_common_hepatic_T: m3 {init: 0, interface: public};
    var q_init_common_hepatic_T: m3 {init: 0, interface: public};
    var u_ext_common_hepatic_T: J_per_m3 {init: 0, interface: public};
    var u_out_common_hepatic_T: J_per_m3 {init: 0, interface: public};
    var R_T_left_gastric_T: Js_per_m6 {init: 171696751436.2, interface: public};
    var C_T_left_gastric_T: m6_per_J {init: 1.64947997e-12, interface: public};
    var q_us_left_gastric_T: m3 {init: 0, interface: public};
    var q_init_left_gastric_T: m3 {init: 0, interface: public};
    var u_ext_left_gastric_T: J_per_m3 {init: 0, interface: public};
    var u_out_left_gastric_T: J_per_m3 {init: 0, interface: public};
    var R_T_splenic_II_T: Js_per_m6 {init: 2366661754.5, interface: public};
    var C_T_splenic_II_T: m6_per_J {init: 1.1966659457e-10, interface: public};
    var q_us_splenic_II_T: m3 {init: 0, interface: public};
    var q_init_splenic_II_T: m3 {init: 0, interface: public};
    var u_ext_splenic_II_T: J_per_m3 {init: 0, interface: public};
    var u_out_splenic_II_T: J_per_m3 {init: 0, interface: public};
    var R_T_superior_mesenteric_T: Js_per_m6 {init: 1090962664.9, interface: public};
    var C_T_superior_mesenteric_T: m6_per_J {init: 2.5959674129e-10, interface: public};
    var q_us_superior_mesenteric_T: m3 {init: 0, interface: public};
    var q_init_superior_mesenteric_T: m3 {init: 0, interface: public};
    var u_ext_superior_mesenteric_T: J_per_m3 {init: 0, interface: public};
    var u_out_superior_mesenteric_T: J_per_m3 {init: 0, interface: public};
    var R_T_renal_L_T: Js_per_m6 {init: 1131408037.7, interface: public};
    var C_T_renal_L_T: m6_per_J {init: 2.5031672325e-10, interface: public};
    var q_us_renal_L_T: m3 {init: 0, interface: public};
    var q_init_renal_L_T: m3 {init: 0, interface: public};
    var u_ext_renal_L_T: J_per_m3 {init: 0, interface: public};
    var u_out_renal_L_T: J_per_m3 {init: 0, interface: public};
    var R_T_renal_R_T: Js_per_m6 {init: 1135206894.1, interface: public};
    var C_T_renal_R_T: m6_per_J {init: 2.4947906336e-10, interface: public};
    var q_us_renal_R_T: m3 {init: 0, interface: public};
    var q_init_renal_R_T: m3 {init: 0, interface: public};
    var u_ext_renal_R_T: J_per_m3 {init: 0, interface: public};
    var u_out_renal_R_T: J_per_m3 {init: 0, interface: public};
    var R_T_inferior_mesenteric_T: Js_per_m6 {init: 11956450359.4, interface: public};
    var C_T_inferior_mesenteric_T: m6_per_J {init: 2.368682545e-11, interface: public};
    var q_us_inferior_mesenteric_T: m3 {init: 0, interface: public};
    var q_init_inferior_mesenteric_T: m3 {init: 0, interface: public};
    var u_ext_inferior_mesenteric_T: J_per_m3 {init: 0, interface: public};
    var u_out_inferior_mesenteric_T: J_per_m3 {init: 0, interface: public};
    var R_T_internal_iliac_R_T: Js_per_m6 {init: 2072778133.7, interface: public};
    var C_T_internal_iliac_R_T: m6_per_J {init: 1.3663322092e-10, interface: public};
    var q_us_internal_iliac_R_T: m3 {init: 0, interface: public};
    var q_init_internal_iliac_R_T: m3 {init: 0, interface: public};
    var u_ext_internal_iliac_R_T: J_per_m3 {init: 0, interface: public};
    var u_out_internal_iliac_R_T: J_per_m3 {init: 0, interface: public};
    var R_T_profunda_femoris_R_T: Js_per_m6 {init: 1713436087.6, interface: public};
    var C_T_profunda_femoris_R_T: m6_per_J {init: 1.6528795833e-10, interface: public};
    var q_us_profunda_femoris_R_T: m3 {init: 0, interface: public};
    var q_init_profunda_femoris_R_T: m3 {init: 0, interface: public};
    var u_ext_profunda_femoris_R_T: J_per_m3 {init: 0, interface: public};
    var u_out_profunda_femoris_R_T: J_per_m3 {init: 0, interface: public};
    var R_T_anterior_tibial_R_T: Js_per_m6 {init: 12262555203.7, interface: public};
    var C_T_anterior_tibial_R_T: m6_per_J {init: 2.309554151e-11, interface: public};
    var q_us_anterior_tibial_R_T: m3 {init: 0, interface: public};
    var q_init_anterior_tibial_R_T: m3 {init: 0, interface: public};
    var u_ext_anterior_tibial_R_T: J_per_m3 {init: 0, interface: public};
    var u_out_anterior_tibial_R_T: J_per_m3 {init: 0, interface: public};
    var R_T_posterior_tibial_R_T: Js_per_m6 {init: 10578184541.5, interface: public};
    var C_T_posterior_tibial_R_T: m6_per_J {init: 2.677305842e-11, interface: public};
    var q_us_posterior_tibial_R_T: m3 {init: 0, interface: public};
    var q_init_posterior_tibial_R_T: m3 {init: 0, interface: public};
    var u_ext_posterior_tibial_R_T: J_per_m3 {init: 0, interface: public};
    var u_out_posterior_tibial_R_T: J_per_m3 {init: 0, interface: public};
    var R_T_internal_iliac_L_T: Js_per_m6 {init: 2078985890.9, interface: public};
    var C_T_internal_iliac_L_T: m6_per_J {init: 1.3622524035e-10, interface: public};
    var q_us_internal_iliac_L_T: m3 {init: 0, interface: public};
    var q_init_internal_iliac_L_T: m3 {init: 0, interface: public};
    var u_ext_internal_iliac_L_T: J_per_m3 {init: 0, interface: public};
    var u_out_internal_iliac_L_T: J_per_m3 {init: 0, interface: public};
    var R_T_profunda_femoris_L_T: Js_per_m6 {init: 1714348117.5, interface: public};
    var C_T_profunda_femoris_L_T: m6_per_J {init: 1.652e-10, interface: public};
    var q_us_profunda_femoris_L_T: m3 {init: 0, interface: public};
    var q_init_profunda_femoris_L_T: m3 {init: 0, interface: public};
    var u_ext_profunda_femoris_L_T: J_per_m3 {init: 0, interface: public};
    var u_out_profunda_femoris_L_T: J_per_m3 {init: 0, interface: public};
    var R_T_anterior_tibial_L_T: Js_per_m6 {init: 12266412645.1, interface: public};
    var C_T_anterior_tibial_L_T: m6_per_J {init: 2.308827861e-11, interface: public};
    var q_us_anterior_tibial_L_T: m3 {init: 0, interface: public};
    var q_init_anterior_tibial_L_T: m3 {init: 0, interface: public};
    var u_ext_anterior_tibial_L_T: J_per_m3 {init: 0, interface: public};
    var u_out_anterior_tibial_L_T: J_per_m3 {init: 0, interface: public};
    var R_T_posterior_tibial_L_T: Js_per_m6 {init: 10582795134.9, interface: public};
    var C_T_posterior_tibial_L_T: m6_per_J {init: 2.676139423e-11, interface: public};
    var q_us_posterior_tibial_L_T: m3 {init: 0, interface: public};
    var q_init_posterior_tibial_L_T: m3 {init: 0, interface: public};
    var u_ext_posterior_tibial_L_T: J_per_m3 {init: 0, interface: public};
    var u_out_posterior_tibial_L_T: J_per_m3 {init: 0, interface: public};
    var E_K_tube_aortic_arch_I: J_per_m3 {init: 225000, interface: public};
    var K_m_K_tube_aortic_arch_I: Js_per_m3 {init: 30000, interface: public};
    var E_K_tube_brachiocephalic_trunk: J_per_m3 {init: 225000, interface: public};
    var K_m_K_tube_brachiocephalic_trunk: Js_per_m3 {init: 30000, interface: public};
    var E_K_tube_aortic_arch_II: J_per_m3 {init: 225000, interface: public};
    var K_m_K_tube_aortic_arch_II: Js_per_m3 {init: 30000, interface: public};
    var E_K_tube_subclavian_R_I: J_per_m3 {init: 225000, interface: public};
    var K_m_K_tube_subclavian_R_I: Js_per_m3 {init: 30000, interface: public};
    var E_K_tube_common_carotid_R: J_per_m3 {init: 225000, interface: public};
    var K_m_K_tube_common_carotid_R: Js_per_m3 {init: 30000, interface: public};
    var E_K_tube_vertebral_R: J_per_m3 {init: 225000, interface: public};
    var K_m_K_tube_vertebral_R: Js_per_m3 {init: 30000, interface: public};
    var E_K_tube_subclavian_R_II: J_per_m3 {init: 225000, interface: public};
    var K_m_K_tube_subclavian_R_II: Js_per_m3 {init: 30000, interface: public};
    var E_K_tube_axillary_R: J_per_m3 {init: 225000, interface: public};
    var K_m_K_tube_axillary_R: Js_per_m3 {init: 30000, interface: public};
    var E_K_tube_brachial_R: J_per_m3 {init: 225000, interface: public};
    var K_m_K_tube_brachial_R: Js_per_m3 {init: 30000, interface: public};
    var E_K_tube_radial_R: J_per_m3 {init: 225000, interface: public};
    var K_m_K_tube_radial_R: Js_per_m3 {init: 30000, interface: public};
    var E_K_tube_ulnar_R_I: J_per_m3 {init: 225000, interface: public};
    var K_m_K_tube_ulnar_R_I: Js_per_m3 {init: 30000, interface: public};
    var E_K_tube_common_interosseous_R: J_per_m3 {init: 225000, interface: public};
    var K_m_K_tube_common_interosseous_R: Js_per_m3 {init: 30000, interface: public};
    var E_K_tube_ulnar_R_II: J_per_m3 {init: 225000, interface: public};
    var K_m_K_tube_ulnar_R_II: Js_per_m3 {init: 30000, interface: public};
    var E_K_tube_posterior_interosseous_R: J_per_m3 {init: 225000, interface: public};
    var K_m_K_tube_posterior_interosseous_R: Js_per_m3 {init: 30000, interface: public};
    var E_K_tube_external_carotid_R: J_per_m3 {init: 225000, interface: public};
    var K_m_K_tube_external_carotid_R: Js_per_m3 {init: 30000, interface: public};
    var E_K_tube_internal_carotid_R: J_per_m3 {init: 225000, interface: public};
    var K_m_K_tube_internal_carotid_R: Js_per_m3 {init: 30000, interface: public};
    var E_K_tube_common_carotid_L: J_per_m3 {init: 225000, interface: public};
    var K_m_K_tube_common_carotid_L: Js_per_m3 {init: 30000, interface: public};
    var E_K_tube_aortic_arch_III: J_per_m3 {init: 225000, interface: public};
    var K_m_K_tube_aortic_arch_III: Js_per_m3 {init: 30000, interface: public};
    var E_K_tube_external_carotid_L: J_per_m3 {init: 225000, interface: public};
    var K_m_K_tube_external_carotid_L: Js_per_m3 {init: 30000, interface: public};
    var E_K_tube_internal_carotid_L: J_per_m3 {init: 225000, interface: public};
    var K_m_K_tube_internal_carotid_L: Js_per_m3 {init: 30000, interface: public};
    var E_K_tube_subclavian_L_I: J_per_m3 {init: 225000, interface: public};
    var K_m_K_tube_subclavian_L_I: Js_per_m3 {init: 30000, interface: public};
    var E_K_tube_aortic_arch_IV: J_per_m3 {init: 225000, interface: public};
    var K_m_K_tube_aortic_arch_IV: Js_per_m3 {init: 30000, interface: public};
    var E_K_tube_vertebral_L: J_per_m3 {init: 225000, interface: public};
    var K_m_K_tube_vertebral_L: Js_per_m3 {init: 30000, interface: public};
    var E_K_tube_subclavian_L_II: J_per_m3 {init: 225000, interface: public};
    var K_m_K_tube_subclavian_L_II: Js_per_m3 {init: 30000, interface: public};
    var E_K_tube_axillary_L: J_per_m3 {init: 225000, interface: public};
    var K_m_K_tube_axillary_L: Js_per_m3 {init: 30000, interface: public};
    var E_K_tube_brachial_L: J_per_m3 {init: 225000, interface: public};
    var K_m_K_tube_brachial_L: Js_per_m3 {init: 30000, interface: public};
    var E_K_tube_radial_L: J_per_m3 {init: 225000, interface: public};
    var K_m_K_tube_radial_L: Js_per_m3 {init: 30000, interface: public};
    var E_K_tube_ulnar_L_I: J_per_m3 {init: 225000, interface: public};
    var K_m_K_tube_ulnar_L_I: Js_per_m3 {init: 30000, interface: public};
    var E_K_tube_common_interosseous_L: J_per_m3 {init: 225000, interface: public};
    var K_m_K_tube_common_interosseous_L: Js_per_m3 {init: 30000, interface: public};
    var E_K_tube_ulnar_L_II: J_per_m3 {init: 225000, interface: public};
    var K_m_K_tube_ulnar_L_II: Js_per_m3 {init: 30000, interface: public};
    var E_K_tube_posterior_interosseous_L: J_per_m3 {init: 225000, interface: public};
    var K_m_K_tube_posterior_interosseous_L: Js_per_m3 {init: 30000, interface: public};
    var E_K_tube_thoracic_aorta_I: J_per_m3 {init: 225000, interface: public};
    var K_m_K_tube_thoracic_aorta_I: Js_per_m3 {init: 30000, interface: public};
    var E_K_tube_posterior_intercostal_T6_R: J_per_m3 {init: 225000, interface: public};
    var K_m_K_tube_posterior_intercostal_T6_R: Js_per_m3 {init: 30000, interface: public};
    var E_K_tube_thoracic_aorta_II: J_per_m3 {init: 225000, interface: public};
    var K_m_K_tube_thoracic_aorta_II: Js_per_m3 {init: 30000, interface: public};
    var E_K_tube_posterior_intercostal_T6_L: J_per_m3 {init: 225000, interface: public};
    var K_m_K_tube_posterior_intercostal_T6_L: Js_per_m3 {init: 30000, interface: public};
    var E_K_tube_thoracic_aorta_III: J_per_m3 {init: 225000, interface: public};
    var K_m_K_tube_thoracic_aorta_III: Js_per_m3 {init: 30000, interface: public};
    var E_K_tube_posterior_intercostal_T7_R: J_per_m3 {init: 225000, interface: public};
    var K_m_K_tube_posterior_intercostal_T7_R: Js_per_m3 {init: 30000, interface: public};
    var E_K_tube_thoracic_aorta_IV: J_per_m3 {init: 225000, interface: public};
    var K_m_K_tube_thoracic_aorta_IV: Js_per_m3 {init: 30000, interface: public};
    var E_K_tube_posterior_intercostal_T7_L: J_per_m3 {init: 225000, interface: public};
    var K_m_K_tube_posterior_intercostal_T7_L: Js_per_m3 {init: 30000, interface: public};
    var E_K_tube_thoracic_aorta_V: J_per_m3 {init: 225000, interface: public};
    var K_m_K_tube_thoracic_aorta_V: Js_per_m3 {init: 30000, interface: public};
    var E_K_tube_thoracic_aorta_VI: J_per_m3 {init: 225000, interface: public};
    var K_m_K_tube_thoracic_aorta_VI: Js_per_m3 {init: 30000, interface: public};
    var E_K_tube_celiac_trunk: J_per_m3 {init: 225000, interface: public};
    var K_m_K_tube_celiac_trunk: Js_per_m3 {init: 30000, interface: public};
    var E_K_tube_abdominal_aorta_I: J_per_m3 {init: 225000, interface: public};
    var K_m_K_tube_abdominal_aorta_I: Js_per_m3 {init: 30000, interface: public};
    var E_K_tube_common_hepatic: J_per_m3 {init: 225000, interface: public};
    var K_m_K_tube_common_hepatic: Js_per_m3 {init: 30000, interface: public};
    var E_K_tube_splenic_I: J_per_m3 {init: 225000, interface: public};
    var K_m_K_tube_splenic_I: Js_per_m3 {init: 30000, interface: public};
    var E_K_tube_left_gastric: J_per_m3 {init: 225000, interface: public};
    var K_m_K_tube_left_gastric: Js_per_m3 {init: 30000, interface: public};
    var E_K_tube_splenic_II: J_per_m3 {init: 225000, interface: public};
    var K_m_K_tube_splenic_II: Js_per_m3 {init: 30000, interface: public};
    var E_K_tube_superior_mesenteric: J_per_m3 {init: 225000, interface: public};
    var K_m_K_tube_superior_mesenteric: Js_per_m3 {init: 30000, interface: public};
    var E_K_tube_abdominal_aorta_II: J_per_m3 {init: 225000, interface: public};
    var K_m_K_tube_abdominal_aorta_II: Js_per_m3 {init: 30000, interface: public};
    var E_K_tube_renal_L: J_per_m3 {init: 225000, interface: public};
    var K_m_K_tube_renal_L: Js_per_m3 {init: 30000, interface: public};
    var E_K_tube_abdominal_aorta_III: J_per_m3 {init: 225000, interface: public};
    var K_m_K_tube_abdominal_aorta_III: Js_per_m3 {init: 30000, interface: public};
    var E_K_tube_renal_R: J_per_m3 {init: 225000, interface: public};
    var K_m_K_tube_renal_R: Js_per_m3 {init: 30000, interface: public};
    var E_K_tube_abdominal_aorta_IV: J_per_m3 {init: 225000, interface: public};
    var K_m_K_tube_abdominal_aorta_IV: Js_per_m3 {init: 30000, interface: public};
    var E_K_tube_inferior_mesenteric: J_per_m3 {init: 225000, interface: public};
    var K_m_K_tube_inferior_mesenteric: Js_per_m3 {init: 30000, interface: public};
    var E_K_tube_abdominal_aorta_V: J_per_m3 {init: 225000, interface: public};
    var K_m_K_tube_abdominal_aorta_V: Js_per_m3 {init: 30000, interface: public};
    var E_K_tube_common_iliac_R: J_per_m3 {init: 225000, interface: public};
    var K_m_K_tube_common_iliac_R: Js_per_m3 {init: 30000, interface: public};
    var E_K_tube_common_iliac_L: J_per_m3 {init: 225000, interface: public};
    var K_m_K_tube_common_iliac_L: Js_per_m3 {init: 30000, interface: public};
    var E_K_tube_external_iliac_R: J_per_m3 {init: 225000, interface: public};
    var K_m_K_tube_external_iliac_R: Js_per_m3 {init: 30000, interface: public};
    var E_K_tube_internal_iliac_R: J_per_m3 {init: 225000, interface: public};
    var K_m_K_tube_internal_iliac_R: Js_per_m3 {init: 30000, interface: public};
    var E_K_tube_femoral_R_I: J_per_m3 {init: 225000, interface: public};
    var K_m_K_tube_femoral_R_I: Js_per_m3 {init: 30000, interface: public};
    var E_K_tube_profunda_femoris_R: J_per_m3 {init: 225000, interface: public};
    var K_m_K_tube_profunda_femoris_R: Js_per_m3 {init: 30000, interface: public};
    var E_K_tube_femoral_R_II: J_per_m3 {init: 225000, interface: public};
    var K_m_K_tube_femoral_R_II: Js_per_m3 {init: 30000, interface: public};
    var E_K_tube_popliteal_R_I: J_per_m3 {init: 225000, interface: public};
    var K_m_K_tube_popliteal_R_I: Js_per_m3 {init: 30000, interface: public};
    var E_K_tube_anterior_tibial_R: J_per_m3 {init: 225000, interface: public};
    var K_m_K_tube_anterior_tibial_R: Js_per_m3 {init: 30000, interface: public};
    var E_K_tube_popliteal_R_II: J_per_m3 {init: 225000, interface: public};
    var K_m_K_tube_popliteal_R_II: Js_per_m3 {init: 30000, interface: public};
    var E_K_tube_tibiofibular_trunk_R: J_per_m3 {init: 225000, interface: public};
    var K_m_K_tube_tibiofibular_trunk_R: Js_per_m3 {init: 30000, interface: public};
    var E_K_tube_posterior_tibial_R: J_per_m3 {init: 225000, interface: public};
    var K_m_K_tube_posterior_tibial_R: Js_per_m3 {init: 30000, interface: public};
    var E_K_tube_external_iliac_L: J_per_m3 {init: 225000, interface: public};
    var K_m_K_tube_external_iliac_L: Js_per_m3 {init: 30000, interface: public};
    var E_K_tube_internal_iliac_L: J_per_m3 {init: 225000, interface: public};
    var K_m_K_tube_internal_iliac_L: Js_per_m3 {init: 30000, interface: public};
    var E_K_tube_femoral_L_I: J_per_m3 {init: 225000, interface: public};
    var K_m_K_tube_femoral_L_I: Js_per_m3 {init: 30000, interface: public};
    var E_K_tube_profunda_femoris_L: J_per_m3 {init: 225000, interface: public};
    var K_m_K_tube_profunda_femoris_L: Js_per_m3 {init: 30000, interface: public};
    var E_K_tube_femoral_L_II: J_per_m3 {init: 225000, interface: public};
    var K_m_K_tube_femoral_L_II: Js_per_m3 {init: 30000, interface: public};
    var E_K_tube_popliteal_L_I: J_per_m3 {init: 225000, interface: public};
    var K_m_K_tube_popliteal_L_I: Js_per_m3 {init: 30000, interface: public};
    var E_K_tube_anterior_tibial_L: J_per_m3 {init: 225000, interface: public};
    var K_m_K_tube_anterior_tibial_L: Js_per_m3 {init: 30000, interface: public};
    var E_K_tube_popliteal_L_II: J_per_m3 {init: 225000, interface: public};
    var K_m_K_tube_popliteal_L_II: Js_per_m3 {init: 30000, interface: public};
    var E_K_tube_tibiofibular_trunk_L: J_per_m3 {init: 225000, interface: public};
    var K_m_K_tube_tibiofibular_trunk_L: Js_per_m3 {init: 30000, interface: public};
    var E_K_tube_posterior_tibial_L: J_per_m3 {init: 225000, interface: public};
    var K_m_K_tube_posterior_tibial_L: Js_per_m3 {init: 30000, interface: public};
  enddef;

  def comp parameters_global as
    var T: second {init: 1, interface: public};
    var mu: Js_per_m3 {init: 0.004, interface: public};
    var rho: kg_per_m3 {init: 1040, interface: public};
    var g: m_per_s2 {init: 9.81, interface: public};
    var beta_g: dimensionless {init: 0, interface: public};
    var R_flag: dimensionless {init: 1, interface: public};
    var nu: dimensionless {init: 0.5, interface: public};
    var SMvolfrac_art: dimensionless {init: 0.1, interface: public};
    var a_vessel: dimensionless {init: 0.2802, interface: public};
    var b_vessel: per_m {init: -505.3, interface: public};
    var c_vessel: dimensionless {init: 0.1324, interface: public};
    var d_vessel: per_m {init: -11.14, interface: public};
  enddef;

  def comp environment as
    var time: second {interface: public};
  enddef;

  def comp input_flow_aorticroot_module as
    var t: second {interface: public};
    var T: second {interface: public};
    var v: m3_per_s {interface: public};
    var P: J_per_m3 {interface: public};
    var t_loc: second {interface: public};
    var t_0: second {interface: public};
    var t_1: second {interface: public};
    var t_2: second {interface: public};
    var t_3: second {interface: public};
    var t_4: second {interface: public};
    var t_5: second {interface: public};
    var t_6: second {interface: public};
    var t_7: second {interface: public};
    var t_8: second {interface: public};
    var t_9: second {interface: public};
    var t_10: second {interface: public};
    var t_11: second {interface: public};
    var t_12: second {interface: public};
    var t_13: second {interface: public};
    var t_14: second {interface: public};
    var t_15: second {interface: public};
    var t_16: second {interface: public};
    var t_17: second {interface: public};
    var t_18: second {interface: public};
    var t_19: second {interface: public};
    var t_20: second {interface: public};
    var t_21: second {interface: public};
    var q_0: m3_per_s {interface: public};
    var q_1: m3_per_s {interface: public};
    var q_2: m3_per_s {interface: public};
    var q_3: m3_per_s {interface: public};
    var q_4: m3_per_s {interface: public};
    var q_5: m3_per_s {interface: public};
    var q_6: m3_per_s {interface: public};
    var q_7: m3_per_s {interface: public};
    var q_8: m3_per_s {interface: public};
    var q_9: m3_per_s {interface: public};
    var q_10: m3_per_s {interface: public};
    var q_11: m3_per_s {interface: public};
    var q_12: m3_per_s {interface: public};
    var q_13: m3_per_s {interface: public};
    var q_14: m3_per_s {interface: public};
    var q_15: m3_per_s {interface: public};
    var q_16: m3_per_s {interface: public};
    var q_17: m3_per_s {interface: public};
    var q_18: m3_per_s {interface: public};
    var q_19: m3_per_s {interface: public};
    var q_20: m3_per_s {interface: public};
    var q_21: m3_per_s {interface: public};
    t_loc = t-floor(t/T)*T;
    t_0 = 0.0{second};
    t_1 = 0.02193{second};
    t_2 = 0.041305{second};
    t_3 = 0.06068{second};
    t_4 = 0.080055{second};
    t_5 = 0.09943{second};
    t_6 = 0.118805{second};
    t_7 = 0.128492{second};
    t_8 = 0.13818{second};
    t_9 = 0.157555{second};
    t_10 = 0.17693{second};
    t_11 = 0.196305{second};
    t_12 = 0.244742{second};
    t_13 = 0.322242{second};
    t_14 = 0.351305{second};
    t_15 = 0.390055{second};
    t_16 = 0.415117{second};
    t_17 = 0.437555{second};
    t_18 = 0.48693{second};
    t_19 = 0.515992{second};
    t_20 = 0.583805{second};
    t_21 = 1.0{second};
    q_0 = 0.0{m3_per_s};
    q_1 = 0.0{m3_per_s};
    q_2 = 0.000105089{m3_per_s};
    q_3 = 0.00027323{m3_per_s};
    q_4 = 0.000404592{m3_per_s};
    q_5 = 0.000535952{m3_per_s};
    q_6 = 0.000567479{m3_per_s};
    q_7 = 0.000572734{m3_per_s};
    q_8 = 0.000567479{m3_per_s};
    q_9 = 0.000535952{m3_per_s};
    q_10 = 0.000488663{m3_per_s};
    q_11 = 0.000451882{m3_per_s};
    q_12 = 0.000315266{m3_per_s};
    q_13 = 0.000178651{m3_per_s};
    q_14 = 0.000136615{m3_per_s};
    q_15 = 0.0{m3_per_s};
    q_16 = -0.000162888{m3_per_s};
    q_17 = -2.10178e-05{m3_per_s};
    q_18 = 0.0{m3_per_s};
    q_19 = 5.25444e-06{m3_per_s};
    q_20 = 0.0{m3_per_s};
    q_21 = 0.0{m3_per_s};
    v = sel
      case (t_loc >= t_0) and (t_loc <= t_1):
        (1{dimensionless}-(t_loc-t_0)/(t_1-t_0))*q_0+(t_loc-t_0)/(t_1-t_0)*q_1;
      case (t_loc >= t_1) and (t_loc <= t_2):
        (1{dimensionless}-(t_loc-t_1)/(t_2-t_1))*q_1+(t_loc-t_1)/(t_2-t_1)*q_2;
      case (t_loc >= t_2) and (t_loc <= t_3):
        (1{dimensionless}-(t_loc-t_2)/(t_3-t_2))*q_2+(t_loc-t_2)/(t_3-t_2)*q_3;
      case (t_loc >= t_3) and (t_loc <= t_4):
        (1{dimensionless}-(t_loc-t_3)/(t_4-t_3))*q_3+(t_loc-t_3)/(t_4-t_3)*q_4;
      case (t_loc >= t_4) and (t_loc <= t_5):
        (1{dimensionless}-(t_loc-t_4)/(t_5-t_4))*q_4+(t_loc-t_4)/(t_5-t_4)*q_5;
      case (t_loc >= t_5) and (t_loc <= t_6):
        (1{dimensionless}-(t_loc-t_5)/(t_6-t_5))*q_5+(t_loc-t_5)/(t_6-t_5)*q_6;
      case (t_loc >= t_6) and (t_loc <= t_7):
        (1{dimensionless}-(t_loc-t_6)/(t_7-t_6))*q_6+(t_loc-t_6)/(t_7-t_6)*q_7;
      case (t_loc >= t_7) and (t_loc <= t_8):
        (1{dimensionless}-(t_loc-t_7)/(t_8-t_7))*q_7+(t_loc-t_7)/(t_8-t_7)*q_8;
      case (t_loc >= t_8) and (t_loc <= t_9):
        (1{dimensionless}-(t_loc-t_8)/(t_9-t_8))*q_8+(t_loc-t_8)/(t_9-t_8)*q_9;
      case (t_loc >= t_9) and (t_loc <= t_10):
        (1{dimensionless}-(t_loc-t_9)/(t_10-t_9))*q_9+(t_loc-t_9)/(t_10-t_9)*q_10;
      case (t_loc >= t_10) and (t_loc <= t_11):
        (1{dimensionless}-(t_loc-t_10)/(t_11-t_10))*q_10+(t_loc-t_10)/(t_11-t_10)*q_11;
      case (t_loc >= t_11) and (t_loc <= t_12):
        (1{dimensionless}-(t_loc-t_11)/(t_12-t_11))*q_11+(t_loc-t_11)/(t_12-t_11)*q_12;
      case (t_loc >= t_12) and (t_loc <= t_13):
        (1{dimensionless}-(t_loc-t_12)/(t_13-t_12))*q_12+(t_loc-t_12)/(t_13-t_12)*q_13;
      case (t_loc >= t_13) and (t_loc <= t_14):
        (1{dimensionless}-(t_loc-t_13)/(t_14-t_13))*q_13+(t_loc-t_13)/(t_14-t_13)*q_14;
      case (t_loc >= t_14) and (t_loc <= t_15):
        (1{dimensionless}-(t_loc-t_14)/(t_15-t_14))*q_14+(t_loc-t_14)/(t_15-t_14)*q_15;
      case (t_loc >= t_15) and (t_loc <= t_16):
        (1{dimensionless}-(t_loc-t_15)/(t_16-t_15))*q_15+(t_loc-t_15)/(t_16-t_15)*q_16;
      case (t_loc >= t_16) and (t_loc <= t_17):
        (1{dimensionless}-(t_loc-t_16)/(t_17-t_16))*q_16+(t_loc-t_16)/(t_17-t_16)*q_17;
      case (t_loc >= t_17) and (t_loc <= t_18):
        (1{dimensionless}-(t_loc-t_17)/(t_18-t_17))*q_17+(t_loc-t_17)/(t_18-t_17)*q_18;
      case (t_loc >= t_18) and (t_loc <= t_19):
        (1{dimensionless}-(t_loc-t_18)/(t_19-t_18))*q_18+(t_loc-t_18)/(t_19-t_18)*q_19;
      case (t_loc >= t_19) and (t_loc <= t_20):
        (1{dimensionless}-(t_loc-t_19)/(t_20-t_19))*q_19+(t_loc-t_19)/(t_20-t_19)*q_20;
      case (t_loc >= t_20) and (t_loc <= t_21):
        (1{dimensionless}-(t_loc-t_20)/(t_21-t_20))*q_20+(t_loc-t_20)/(t_21-t_20)*q_21;
    endsel;
  enddef;

  def comp aortic_arch_I_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var R: Js_per_m6 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_d: J_per_m3 {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_C_d: m3 {init: 0.0, interface: public};
    var q: m3 {interface: public};
    var q_p: m3 {interface: public};
    var q_d: m3 {interface: public};
    var q_0_2: m3 {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
    var v_in: m3_per_s {interface: public};
    var v_out_sum: m3_per_s {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    q_0_2 = pi*sqr(r_0)*l/2{dimensionless};
    q_p = q_C+q_0_2;
    q_d = q_C_d+q_0_2;
    q = q_p+q_d;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u-u_d-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v_in-v;
    ode(q_C_d, t) = v-v_out_sum;
    // Nonlinear tube law
    // for this 0D module, the length l must be divided by 2 in the formula for K_tube_visco, as the element is split with two pressure variables
    u = u_0+K_tube*(pow(q_p/q_0_2, m_tube)-pow(q_p/q_0_2, n_tube))+u_ext;
    u_d = u_0+K_tube*(pow(q_d/q_0_2, m_tube)-pow(q_d/q_0_2, n_tube))+u_ext;
  enddef;

  def comp brachiocephalic_trunk_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var R: Js_per_m6 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var du_dt: J_per_m3s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v_out_sum: m3_per_s {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // The below assumes constant compliance and is only used as an approximate output for the baroreceptor
    // TODO differentiate the tube law to get what this should be
    du_dt = K_tube*(m_tube*pow(q, m_tube-1{dimensionless})/pow(q_0, m_tube)-n_tube*pow(q, n_tube-1{dimensionless})/pow(q_0, n_tube))*(v-v_out_sum);
    // The below allows non constant compliance
    ode(q_C, t) = v-v_out_sum;
    // Nonlinear tube law
    u = u_0+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube))+K_tube_visco*(v-v_out_sum)+u_ext;
  enddef;

  def comp aortic_arch_II_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var R: Js_per_m6 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var du_dt: J_per_m3s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v_out_sum: m3_per_s {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // The below assumes constant compliance and is only used as an approximate output for the baroreceptor
    // TODO differentiate the tube law to get what this should be
    du_dt = K_tube*(m_tube*pow(q, m_tube-1{dimensionless})/pow(q_0, m_tube)-n_tube*pow(q, n_tube-1{dimensionless})/pow(q_0, n_tube))*(v-v_out_sum);
    // The below allows non constant compliance
    ode(q_C, t) = v-v_out_sum;
    // Nonlinear tube law
    u = u_0+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube))+K_tube_visco*(v-v_out_sum)+u_ext;
  enddef;

  def comp subclavian_R_I_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var R: Js_per_m6 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var du_dt: J_per_m3s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v_out_sum: m3_per_s {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // The below assumes constant compliance and is only used as an approximate output for the baroreceptor
    // TODO differentiate the tube law to get what this should be
    du_dt = K_tube*(m_tube*pow(q, m_tube-1{dimensionless})/pow(q_0, m_tube)-n_tube*pow(q, n_tube-1{dimensionless})/pow(q_0, n_tube))*(v-v_out_sum);
    // The below allows non constant compliance
    ode(q_C, t) = v-v_out_sum;
    // Nonlinear tube law
    u = u_0+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube))+K_tube_visco*(v-v_out_sum)+u_ext;
  enddef;

  def comp common_carotid_R_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var R: Js_per_m6 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var du_dt: J_per_m3s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v_out_sum: m3_per_s {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // The below assumes constant compliance and is only used as an approximate output for the baroreceptor
    // TODO differentiate the tube law to get what this should be
    du_dt = K_tube*(m_tube*pow(q, m_tube-1{dimensionless})/pow(q_0, m_tube)-n_tube*pow(q, n_tube-1{dimensionless})/pow(q_0, n_tube))*(v-v_out_sum);
    // The below allows non constant compliance
    ode(q_C, t) = v-v_out_sum;
    // Nonlinear tube law
    u = u_0+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube))+K_tube_visco*(v-v_out_sum)+u_ext;
  enddef;

  def comp vertebral_R_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var R: Js_per_m6 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    // Nonlinear tube law.
    u = u_0+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube))+K_tube_visco*(v-v_out)+u_ext;
  enddef;

  def comp subclavian_R_II_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var R: Js_per_m6 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    // Nonlinear tube law.
    u = u_0+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube))+K_tube_visco*(v-v_out)+u_ext;
  enddef;

  def comp axillary_R_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var R: Js_per_m6 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    // Nonlinear tube law.
    u = u_0+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube))+K_tube_visco*(v-v_out)+u_ext;
  enddef;

  def comp brachial_R_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var R: Js_per_m6 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var du_dt: J_per_m3s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v_out_sum: m3_per_s {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // The below assumes constant compliance and is only used as an approximate output for the baroreceptor
    // TODO differentiate the tube law to get what this should be
    du_dt = K_tube*(m_tube*pow(q, m_tube-1{dimensionless})/pow(q_0, m_tube)-n_tube*pow(q, n_tube-1{dimensionless})/pow(q_0, n_tube))*(v-v_out_sum);
    // The below allows non constant compliance
    ode(q_C, t) = v-v_out_sum;
    // Nonlinear tube law
    u = u_0+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube))+K_tube_visco*(v-v_out_sum)+u_ext;
  enddef;

  def comp radial_R_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var R: Js_per_m6 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    // Nonlinear tube law.
    u = u_0+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube))+K_tube_visco*(v-v_out)+u_ext;
  enddef;

  def comp ulnar_R_I_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var R: Js_per_m6 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var du_dt: J_per_m3s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v_out_sum: m3_per_s {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // The below assumes constant compliance and is only used as an approximate output for the baroreceptor
    // TODO differentiate the tube law to get what this should be
    du_dt = K_tube*(m_tube*pow(q, m_tube-1{dimensionless})/pow(q_0, m_tube)-n_tube*pow(q, n_tube-1{dimensionless})/pow(q_0, n_tube))*(v-v_out_sum);
    // The below allows non constant compliance
    ode(q_C, t) = v-v_out_sum;
    // Nonlinear tube law
    u = u_0+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube))+K_tube_visco*(v-v_out_sum)+u_ext;
  enddef;

  def comp common_interosseous_R_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var R: Js_per_m6 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    // Nonlinear tube law.
    u = u_0+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube))+K_tube_visco*(v-v_out)+u_ext;
  enddef;

  def comp ulnar_R_II_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var R: Js_per_m6 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    // Nonlinear tube law.
    u = u_0+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube))+K_tube_visco*(v-v_out)+u_ext;
  enddef;

  def comp posterior_interosseous_R_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var R: Js_per_m6 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    // Nonlinear tube law.
    u = u_0+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube))+K_tube_visco*(v-v_out)+u_ext;
  enddef;

  def comp external_carotid_R_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var R: Js_per_m6 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    // Nonlinear tube law.
    u = u_0+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube))+K_tube_visco*(v-v_out)+u_ext;
  enddef;

  def comp internal_carotid_R_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var R: Js_per_m6 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    // Nonlinear tube law.
    u = u_0+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube))+K_tube_visco*(v-v_out)+u_ext;
  enddef;

  def comp common_carotid_L_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var R: Js_per_m6 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var du_dt: J_per_m3s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v_out_sum: m3_per_s {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // The below assumes constant compliance and is only used as an approximate output for the baroreceptor
    // TODO differentiate the tube law to get what this should be
    du_dt = K_tube*(m_tube*pow(q, m_tube-1{dimensionless})/pow(q_0, m_tube)-n_tube*pow(q, n_tube-1{dimensionless})/pow(q_0, n_tube))*(v-v_out_sum);
    // The below allows non constant compliance
    ode(q_C, t) = v-v_out_sum;
    // Nonlinear tube law
    u = u_0+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube))+K_tube_visco*(v-v_out_sum)+u_ext;
  enddef;

  def comp aortic_arch_III_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var R: Js_per_m6 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var du_dt: J_per_m3s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v_out_sum: m3_per_s {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // The below assumes constant compliance and is only used as an approximate output for the baroreceptor
    // TODO differentiate the tube law to get what this should be
    du_dt = K_tube*(m_tube*pow(q, m_tube-1{dimensionless})/pow(q_0, m_tube)-n_tube*pow(q, n_tube-1{dimensionless})/pow(q_0, n_tube))*(v-v_out_sum);
    // The below allows non constant compliance
    ode(q_C, t) = v-v_out_sum;
    // Nonlinear tube law
    u = u_0+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube))+K_tube_visco*(v-v_out_sum)+u_ext;
  enddef;

  def comp external_carotid_L_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var R: Js_per_m6 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    // Nonlinear tube law.
    u = u_0+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube))+K_tube_visco*(v-v_out)+u_ext;
  enddef;

  def comp internal_carotid_L_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var R: Js_per_m6 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    // Nonlinear tube law.
    u = u_0+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube))+K_tube_visco*(v-v_out)+u_ext;
  enddef;

  def comp subclavian_L_I_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var R: Js_per_m6 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var du_dt: J_per_m3s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v_out_sum: m3_per_s {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // The below assumes constant compliance and is only used as an approximate output for the baroreceptor
    // TODO differentiate the tube law to get what this should be
    du_dt = K_tube*(m_tube*pow(q, m_tube-1{dimensionless})/pow(q_0, m_tube)-n_tube*pow(q, n_tube-1{dimensionless})/pow(q_0, n_tube))*(v-v_out_sum);
    // The below allows non constant compliance
    ode(q_C, t) = v-v_out_sum;
    // Nonlinear tube law
    u = u_0+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube))+K_tube_visco*(v-v_out_sum)+u_ext;
  enddef;

  def comp aortic_arch_IV_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var R: Js_per_m6 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    // Nonlinear tube law.
    u = u_0+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube))+K_tube_visco*(v-v_out)+u_ext;
  enddef;

  def comp vertebral_L_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var R: Js_per_m6 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    // Nonlinear tube law.
    u = u_0+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube))+K_tube_visco*(v-v_out)+u_ext;
  enddef;

  def comp subclavian_L_II_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var R: Js_per_m6 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    // Nonlinear tube law.
    u = u_0+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube))+K_tube_visco*(v-v_out)+u_ext;
  enddef;

  def comp axillary_L_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var R: Js_per_m6 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    // Nonlinear tube law.
    u = u_0+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube))+K_tube_visco*(v-v_out)+u_ext;
  enddef;

  def comp brachial_L_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var R: Js_per_m6 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var du_dt: J_per_m3s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v_out_sum: m3_per_s {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // The below assumes constant compliance and is only used as an approximate output for the baroreceptor
    // TODO differentiate the tube law to get what this should be
    du_dt = K_tube*(m_tube*pow(q, m_tube-1{dimensionless})/pow(q_0, m_tube)-n_tube*pow(q, n_tube-1{dimensionless})/pow(q_0, n_tube))*(v-v_out_sum);
    // The below allows non constant compliance
    ode(q_C, t) = v-v_out_sum;
    // Nonlinear tube law
    u = u_0+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube))+K_tube_visco*(v-v_out_sum)+u_ext;
  enddef;

  def comp radial_L_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var R: Js_per_m6 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    // Nonlinear tube law.
    u = u_0+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube))+K_tube_visco*(v-v_out)+u_ext;
  enddef;

  def comp ulnar_L_I_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var R: Js_per_m6 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var du_dt: J_per_m3s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v_out_sum: m3_per_s {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // The below assumes constant compliance and is only used as an approximate output for the baroreceptor
    // TODO differentiate the tube law to get what this should be
    du_dt = K_tube*(m_tube*pow(q, m_tube-1{dimensionless})/pow(q_0, m_tube)-n_tube*pow(q, n_tube-1{dimensionless})/pow(q_0, n_tube))*(v-v_out_sum);
    // The below allows non constant compliance
    ode(q_C, t) = v-v_out_sum;
    // Nonlinear tube law
    u = u_0+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube))+K_tube_visco*(v-v_out_sum)+u_ext;
  enddef;

  def comp common_interosseous_L_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var R: Js_per_m6 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    // Nonlinear tube law.
    u = u_0+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube))+K_tube_visco*(v-v_out)+u_ext;
  enddef;

  def comp ulnar_L_II_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var R: Js_per_m6 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    // Nonlinear tube law.
    u = u_0+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube))+K_tube_visco*(v-v_out)+u_ext;
  enddef;

  def comp posterior_interosseous_L_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var R: Js_per_m6 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    // Nonlinear tube law.
    u = u_0+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube))+K_tube_visco*(v-v_out)+u_ext;
  enddef;

  def comp thoracic_aorta_I_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var R: Js_per_m6 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var du_dt: J_per_m3s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v_out_sum: m3_per_s {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // The below assumes constant compliance and is only used as an approximate output for the baroreceptor
    // TODO differentiate the tube law to get what this should be
    du_dt = K_tube*(m_tube*pow(q, m_tube-1{dimensionless})/pow(q_0, m_tube)-n_tube*pow(q, n_tube-1{dimensionless})/pow(q_0, n_tube))*(v-v_out_sum);
    // The below allows non constant compliance
    ode(q_C, t) = v-v_out_sum;
    // Nonlinear tube law
    u = u_0+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube))+K_tube_visco*(v-v_out_sum)+u_ext;
  enddef;

  def comp posterior_intercostal_T6_R_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var R: Js_per_m6 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    // Nonlinear tube law.
    u = u_0+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube))+K_tube_visco*(v-v_out)+u_ext;
  enddef;

  def comp thoracic_aorta_II_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var R: Js_per_m6 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var du_dt: J_per_m3s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v_out_sum: m3_per_s {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // The below assumes constant compliance and is only used as an approximate output for the baroreceptor
    // TODO differentiate the tube law to get what this should be
    du_dt = K_tube*(m_tube*pow(q, m_tube-1{dimensionless})/pow(q_0, m_tube)-n_tube*pow(q, n_tube-1{dimensionless})/pow(q_0, n_tube))*(v-v_out_sum);
    // The below allows non constant compliance
    ode(q_C, t) = v-v_out_sum;
    // Nonlinear tube law
    u = u_0+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube))+K_tube_visco*(v-v_out_sum)+u_ext;
  enddef;

  def comp posterior_intercostal_T6_L_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var R: Js_per_m6 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    // Nonlinear tube law.
    u = u_0+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube))+K_tube_visco*(v-v_out)+u_ext;
  enddef;

  def comp thoracic_aorta_III_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var R: Js_per_m6 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var du_dt: J_per_m3s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v_out_sum: m3_per_s {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // The below assumes constant compliance and is only used as an approximate output for the baroreceptor
    // TODO differentiate the tube law to get what this should be
    du_dt = K_tube*(m_tube*pow(q, m_tube-1{dimensionless})/pow(q_0, m_tube)-n_tube*pow(q, n_tube-1{dimensionless})/pow(q_0, n_tube))*(v-v_out_sum);
    // The below allows non constant compliance
    ode(q_C, t) = v-v_out_sum;
    // Nonlinear tube law
    u = u_0+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube))+K_tube_visco*(v-v_out_sum)+u_ext;
  enddef;

  def comp posterior_intercostal_T7_R_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var R: Js_per_m6 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    // Nonlinear tube law.
    u = u_0+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube))+K_tube_visco*(v-v_out)+u_ext;
  enddef;

  def comp thoracic_aorta_IV_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var R: Js_per_m6 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var du_dt: J_per_m3s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v_out_sum: m3_per_s {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // The below assumes constant compliance and is only used as an approximate output for the baroreceptor
    // TODO differentiate the tube law to get what this should be
    du_dt = K_tube*(m_tube*pow(q, m_tube-1{dimensionless})/pow(q_0, m_tube)-n_tube*pow(q, n_tube-1{dimensionless})/pow(q_0, n_tube))*(v-v_out_sum);
    // The below allows non constant compliance
    ode(q_C, t) = v-v_out_sum;
    // Nonlinear tube law
    u = u_0+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube))+K_tube_visco*(v-v_out_sum)+u_ext;
  enddef;

  def comp posterior_intercostal_T7_L_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var R: Js_per_m6 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    // Nonlinear tube law.
    u = u_0+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube))+K_tube_visco*(v-v_out)+u_ext;
  enddef;

  def comp thoracic_aorta_V_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var R: Js_per_m6 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    // Nonlinear tube law.
    u = u_0+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube))+K_tube_visco*(v-v_out)+u_ext;
  enddef;

  def comp thoracic_aorta_VI_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var R: Js_per_m6 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var du_dt: J_per_m3s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v_out_sum: m3_per_s {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // The below assumes constant compliance and is only used as an approximate output for the baroreceptor
    // TODO differentiate the tube law to get what this should be
    du_dt = K_tube*(m_tube*pow(q, m_tube-1{dimensionless})/pow(q_0, m_tube)-n_tube*pow(q, n_tube-1{dimensionless})/pow(q_0, n_tube))*(v-v_out_sum);
    // The below allows non constant compliance
    ode(q_C, t) = v-v_out_sum;
    // Nonlinear tube law
    u = u_0+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube))+K_tube_visco*(v-v_out_sum)+u_ext;
  enddef;

  def comp celiac_trunk_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var R: Js_per_m6 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var du_dt: J_per_m3s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v_out_sum: m3_per_s {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // The below assumes constant compliance and is only used as an approximate output for the baroreceptor
    // TODO differentiate the tube law to get what this should be
    du_dt = K_tube*(m_tube*pow(q, m_tube-1{dimensionless})/pow(q_0, m_tube)-n_tube*pow(q, n_tube-1{dimensionless})/pow(q_0, n_tube))*(v-v_out_sum);
    // The below allows non constant compliance
    ode(q_C, t) = v-v_out_sum;
    // Nonlinear tube law
    u = u_0+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube))+K_tube_visco*(v-v_out_sum)+u_ext;
  enddef;

  def comp abdominal_aorta_I_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var R: Js_per_m6 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var du_dt: J_per_m3s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v_out_sum: m3_per_s {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // The below assumes constant compliance and is only used as an approximate output for the baroreceptor
    // TODO differentiate the tube law to get what this should be
    du_dt = K_tube*(m_tube*pow(q, m_tube-1{dimensionless})/pow(q_0, m_tube)-n_tube*pow(q, n_tube-1{dimensionless})/pow(q_0, n_tube))*(v-v_out_sum);
    // The below allows non constant compliance
    ode(q_C, t) = v-v_out_sum;
    // Nonlinear tube law
    u = u_0+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube))+K_tube_visco*(v-v_out_sum)+u_ext;
  enddef;

  def comp common_hepatic_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var R: Js_per_m6 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    // Nonlinear tube law.
    u = u_0+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube))+K_tube_visco*(v-v_out)+u_ext;
  enddef;

  def comp splenic_I_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var R: Js_per_m6 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var du_dt: J_per_m3s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v_out_sum: m3_per_s {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // The below assumes constant compliance and is only used as an approximate output for the baroreceptor
    // TODO differentiate the tube law to get what this should be
    du_dt = K_tube*(m_tube*pow(q, m_tube-1{dimensionless})/pow(q_0, m_tube)-n_tube*pow(q, n_tube-1{dimensionless})/pow(q_0, n_tube))*(v-v_out_sum);
    // The below allows non constant compliance
    ode(q_C, t) = v-v_out_sum;
    // Nonlinear tube law
    u = u_0+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube))+K_tube_visco*(v-v_out_sum)+u_ext;
  enddef;

  def comp left_gastric_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var R: Js_per_m6 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    // Nonlinear tube law.
    u = u_0+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube))+K_tube_visco*(v-v_out)+u_ext;
  enddef;

  def comp splenic_II_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var R: Js_per_m6 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    // Nonlinear tube law.
    u = u_0+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube))+K_tube_visco*(v-v_out)+u_ext;
  enddef;

  def comp superior_mesenteric_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var R: Js_per_m6 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    // Nonlinear tube law.
    u = u_0+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube))+K_tube_visco*(v-v_out)+u_ext;
  enddef;

  def comp abdominal_aorta_II_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var R: Js_per_m6 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var du_dt: J_per_m3s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v_out_sum: m3_per_s {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // The below assumes constant compliance and is only used as an approximate output for the baroreceptor
    // TODO differentiate the tube law to get what this should be
    du_dt = K_tube*(m_tube*pow(q, m_tube-1{dimensionless})/pow(q_0, m_tube)-n_tube*pow(q, n_tube-1{dimensionless})/pow(q_0, n_tube))*(v-v_out_sum);
    // The below allows non constant compliance
    ode(q_C, t) = v-v_out_sum;
    // Nonlinear tube law
    u = u_0+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube))+K_tube_visco*(v-v_out_sum)+u_ext;
  enddef;

  def comp renal_L_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var R: Js_per_m6 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    // Nonlinear tube law.
    u = u_0+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube))+K_tube_visco*(v-v_out)+u_ext;
  enddef;

  def comp abdominal_aorta_III_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var R: Js_per_m6 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var du_dt: J_per_m3s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v_out_sum: m3_per_s {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // The below assumes constant compliance and is only used as an approximate output for the baroreceptor
    // TODO differentiate the tube law to get what this should be
    du_dt = K_tube*(m_tube*pow(q, m_tube-1{dimensionless})/pow(q_0, m_tube)-n_tube*pow(q, n_tube-1{dimensionless})/pow(q_0, n_tube))*(v-v_out_sum);
    // The below allows non constant compliance
    ode(q_C, t) = v-v_out_sum;
    // Nonlinear tube law
    u = u_0+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube))+K_tube_visco*(v-v_out_sum)+u_ext;
  enddef;

  def comp renal_R_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var R: Js_per_m6 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    // Nonlinear tube law.
    u = u_0+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube))+K_tube_visco*(v-v_out)+u_ext;
  enddef;

  def comp abdominal_aorta_IV_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var R: Js_per_m6 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var du_dt: J_per_m3s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v_out_sum: m3_per_s {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // The below assumes constant compliance and is only used as an approximate output for the baroreceptor
    // TODO differentiate the tube law to get what this should be
    du_dt = K_tube*(m_tube*pow(q, m_tube-1{dimensionless})/pow(q_0, m_tube)-n_tube*pow(q, n_tube-1{dimensionless})/pow(q_0, n_tube))*(v-v_out_sum);
    // The below allows non constant compliance
    ode(q_C, t) = v-v_out_sum;
    // Nonlinear tube law
    u = u_0+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube))+K_tube_visco*(v-v_out_sum)+u_ext;
  enddef;

  def comp inferior_mesenteric_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var R: Js_per_m6 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    // Nonlinear tube law.
    u = u_0+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube))+K_tube_visco*(v-v_out)+u_ext;
  enddef;

  def comp abdominal_aorta_V_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var R: Js_per_m6 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var du_dt: J_per_m3s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v_out_sum: m3_per_s {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // The below assumes constant compliance and is only used as an approximate output for the baroreceptor
    // TODO differentiate the tube law to get what this should be
    du_dt = K_tube*(m_tube*pow(q, m_tube-1{dimensionless})/pow(q_0, m_tube)-n_tube*pow(q, n_tube-1{dimensionless})/pow(q_0, n_tube))*(v-v_out_sum);
    // The below allows non constant compliance
    ode(q_C, t) = v-v_out_sum;
    // Nonlinear tube law
    u = u_0+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube))+K_tube_visco*(v-v_out_sum)+u_ext;
  enddef;

  def comp common_iliac_R_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var R: Js_per_m6 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var du_dt: J_per_m3s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v_out_sum: m3_per_s {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // The below assumes constant compliance and is only used as an approximate output for the baroreceptor
    // TODO differentiate the tube law to get what this should be
    du_dt = K_tube*(m_tube*pow(q, m_tube-1{dimensionless})/pow(q_0, m_tube)-n_tube*pow(q, n_tube-1{dimensionless})/pow(q_0, n_tube))*(v-v_out_sum);
    // The below allows non constant compliance
    ode(q_C, t) = v-v_out_sum;
    // Nonlinear tube law
    u = u_0+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube))+K_tube_visco*(v-v_out_sum)+u_ext;
  enddef;

  def comp common_iliac_L_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var R: Js_per_m6 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var du_dt: J_per_m3s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v_out_sum: m3_per_s {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // The below assumes constant compliance and is only used as an approximate output for the baroreceptor
    // TODO differentiate the tube law to get what this should be
    du_dt = K_tube*(m_tube*pow(q, m_tube-1{dimensionless})/pow(q_0, m_tube)-n_tube*pow(q, n_tube-1{dimensionless})/pow(q_0, n_tube))*(v-v_out_sum);
    // The below allows non constant compliance
    ode(q_C, t) = v-v_out_sum;
    // Nonlinear tube law
    u = u_0+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube))+K_tube_visco*(v-v_out_sum)+u_ext;
  enddef;

  def comp external_iliac_R_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var R: Js_per_m6 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    // Nonlinear tube law.
    u = u_0+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube))+K_tube_visco*(v-v_out)+u_ext;
  enddef;

  def comp internal_iliac_R_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var R: Js_per_m6 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    // Nonlinear tube law.
    u = u_0+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube))+K_tube_visco*(v-v_out)+u_ext;
  enddef;

  def comp femoral_R_I_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var R: Js_per_m6 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var du_dt: J_per_m3s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v_out_sum: m3_per_s {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // The below assumes constant compliance and is only used as an approximate output for the baroreceptor
    // TODO differentiate the tube law to get what this should be
    du_dt = K_tube*(m_tube*pow(q, m_tube-1{dimensionless})/pow(q_0, m_tube)-n_tube*pow(q, n_tube-1{dimensionless})/pow(q_0, n_tube))*(v-v_out_sum);
    // The below allows non constant compliance
    ode(q_C, t) = v-v_out_sum;
    // Nonlinear tube law
    u = u_0+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube))+K_tube_visco*(v-v_out_sum)+u_ext;
  enddef;

  def comp profunda_femoris_R_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var R: Js_per_m6 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    // Nonlinear tube law.
    u = u_0+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube))+K_tube_visco*(v-v_out)+u_ext;
  enddef;

  def comp femoral_R_II_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var R: Js_per_m6 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    // Nonlinear tube law.
    u = u_0+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube))+K_tube_visco*(v-v_out)+u_ext;
  enddef;

  def comp popliteal_R_I_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var R: Js_per_m6 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var du_dt: J_per_m3s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v_out_sum: m3_per_s {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // The below assumes constant compliance and is only used as an approximate output for the baroreceptor
    // TODO differentiate the tube law to get what this should be
    du_dt = K_tube*(m_tube*pow(q, m_tube-1{dimensionless})/pow(q_0, m_tube)-n_tube*pow(q, n_tube-1{dimensionless})/pow(q_0, n_tube))*(v-v_out_sum);
    // The below allows non constant compliance
    ode(q_C, t) = v-v_out_sum;
    // Nonlinear tube law
    u = u_0+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube))+K_tube_visco*(v-v_out_sum)+u_ext;
  enddef;

  def comp anterior_tibial_R_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var R: Js_per_m6 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    // Nonlinear tube law.
    u = u_0+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube))+K_tube_visco*(v-v_out)+u_ext;
  enddef;

  def comp popliteal_R_II_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var R: Js_per_m6 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    // Nonlinear tube law.
    u = u_0+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube))+K_tube_visco*(v-v_out)+u_ext;
  enddef;

  def comp tibiofibular_trunk_R_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var R: Js_per_m6 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    // Nonlinear tube law.
    u = u_0+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube))+K_tube_visco*(v-v_out)+u_ext;
  enddef;

  def comp posterior_tibial_R_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var R: Js_per_m6 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    // Nonlinear tube law.
    u = u_0+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube))+K_tube_visco*(v-v_out)+u_ext;
  enddef;

  def comp external_iliac_L_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var R: Js_per_m6 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    // Nonlinear tube law.
    u = u_0+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube))+K_tube_visco*(v-v_out)+u_ext;
  enddef;

  def comp internal_iliac_L_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var R: Js_per_m6 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    // Nonlinear tube law.
    u = u_0+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube))+K_tube_visco*(v-v_out)+u_ext;
  enddef;

  def comp femoral_L_I_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var R: Js_per_m6 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var du_dt: J_per_m3s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v_out_sum: m3_per_s {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // The below assumes constant compliance and is only used as an approximate output for the baroreceptor
    // TODO differentiate the tube law to get what this should be
    du_dt = K_tube*(m_tube*pow(q, m_tube-1{dimensionless})/pow(q_0, m_tube)-n_tube*pow(q, n_tube-1{dimensionless})/pow(q_0, n_tube))*(v-v_out_sum);
    // The below allows non constant compliance
    ode(q_C, t) = v-v_out_sum;
    // Nonlinear tube law
    u = u_0+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube))+K_tube_visco*(v-v_out_sum)+u_ext;
  enddef;

  def comp profunda_femoris_L_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var R: Js_per_m6 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    // Nonlinear tube law.
    u = u_0+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube))+K_tube_visco*(v-v_out)+u_ext;
  enddef;

  def comp femoral_L_II_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var R: Js_per_m6 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    // Nonlinear tube law.
    u = u_0+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube))+K_tube_visco*(v-v_out)+u_ext;
  enddef;

  def comp popliteal_L_I_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var R: Js_per_m6 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var du_dt: J_per_m3s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_0: m3 {interface: public};
    var q: m3 {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v_out_sum: m3_per_s {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // The below assumes constant compliance and is only used as an approximate output for the baroreceptor
    // TODO differentiate the tube law to get what this should be
    du_dt = K_tube*(m_tube*pow(q, m_tube-1{dimensionless})/pow(q_0, m_tube)-n_tube*pow(q, n_tube-1{dimensionless})/pow(q_0, n_tube))*(v-v_out_sum);
    // The below allows non constant compliance
    ode(q_C, t) = v-v_out_sum;
    // Nonlinear tube law
    u = u_0+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube))+K_tube_visco*(v-v_out_sum)+u_ext;
  enddef;

  def comp anterior_tibial_L_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var R: Js_per_m6 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    // Nonlinear tube law.
    u = u_0+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube))+K_tube_visco*(v-v_out)+u_ext;
  enddef;

  def comp popliteal_L_II_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var R: Js_per_m6 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    // Nonlinear tube law.
    u = u_0+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube))+K_tube_visco*(v-v_out)+u_ext;
  enddef;

  def comp tibiofibular_trunk_L_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var R: Js_per_m6 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    // Nonlinear tube law.
    u = u_0+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube))+K_tube_visco*(v-v_out)+u_ext;
  enddef;

  def comp posterior_tibial_L_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var R: Js_per_m6 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    // Nonlinear tube law.
    u = u_0+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube))+K_tube_visco*(v-v_out)+u_ext;
  enddef;

  def comp external_carotid_R_T_module as
    var t: second {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_in: J_per_m3 {interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_T: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
    var q: m3 {init: q_init, interface: public};
    R_v = 0.01{second}/C_T;
    I_T = 1e-6{Js2_per_m6};
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q, t) = v-v_T;
    u_C = (q-q_us)/C_T;
    // + u_ext;
    u = u_C+u_ext+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_T/2{dimensionless})/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_T/2{dimensionless})/I_T;
  enddef;

  def comp internal_carotid_R_T_module as
    var t: second {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_in: J_per_m3 {interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_T: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
    var q: m3 {init: q_init, interface: public};
    R_v = 0.01{second}/C_T;
    I_T = 1e-6{Js2_per_m6};
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q, t) = v-v_T;
    u_C = (q-q_us)/C_T;
    // + u_ext;
    u = u_C+u_ext+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_T/2{dimensionless})/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_T/2{dimensionless})/I_T;
  enddef;

  def comp vertebral_R_T_module as
    var t: second {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_in: J_per_m3 {interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_T: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
    var q: m3 {init: q_init, interface: public};
    R_v = 0.01{second}/C_T;
    I_T = 1e-6{Js2_per_m6};
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q, t) = v-v_T;
    u_C = (q-q_us)/C_T;
    // + u_ext;
    u = u_C+u_ext+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_T/2{dimensionless})/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_T/2{dimensionless})/I_T;
  enddef;

  def comp radial_R_T_module as
    var t: second {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_in: J_per_m3 {interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_T: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
    var q: m3 {init: q_init, interface: public};
    R_v = 0.01{second}/C_T;
    I_T = 1e-6{Js2_per_m6};
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q, t) = v-v_T;
    u_C = (q-q_us)/C_T;
    // + u_ext;
    u = u_C+u_ext+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_T/2{dimensionless})/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_T/2{dimensionless})/I_T;
  enddef;

  def comp posterior_interosseous_R_T_module as
    var t: second {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_in: J_per_m3 {interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_T: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
    var q: m3 {init: q_init, interface: public};
    R_v = 0.01{second}/C_T;
    I_T = 1e-6{Js2_per_m6};
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q, t) = v-v_T;
    u_C = (q-q_us)/C_T;
    // + u_ext;
    u = u_C+u_ext+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_T/2{dimensionless})/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_T/2{dimensionless})/I_T;
  enddef;

  def comp ulnar_R_II_T_module as
    var t: second {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_in: J_per_m3 {interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_T: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
    var q: m3 {init: q_init, interface: public};
    R_v = 0.01{second}/C_T;
    I_T = 1e-6{Js2_per_m6};
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q, t) = v-v_T;
    u_C = (q-q_us)/C_T;
    // + u_ext;
    u = u_C+u_ext+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_T/2{dimensionless})/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_T/2{dimensionless})/I_T;
  enddef;

  def comp external_carotid_L_T_module as
    var t: second {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_in: J_per_m3 {interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_T: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
    var q: m3 {init: q_init, interface: public};
    R_v = 0.01{second}/C_T;
    I_T = 1e-6{Js2_per_m6};
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q, t) = v-v_T;
    u_C = (q-q_us)/C_T;
    // + u_ext;
    u = u_C+u_ext+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_T/2{dimensionless})/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_T/2{dimensionless})/I_T;
  enddef;

  def comp internal_carotid_L_T_module as
    var t: second {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_in: J_per_m3 {interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_T: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
    var q: m3 {init: q_init, interface: public};
    R_v = 0.01{second}/C_T;
    I_T = 1e-6{Js2_per_m6};
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q, t) = v-v_T;
    u_C = (q-q_us)/C_T;
    // + u_ext;
    u = u_C+u_ext+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_T/2{dimensionless})/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_T/2{dimensionless})/I_T;
  enddef;

  def comp vertebral_L_T_module as
    var t: second {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_in: J_per_m3 {interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_T: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
    var q: m3 {init: q_init, interface: public};
    R_v = 0.01{second}/C_T;
    I_T = 1e-6{Js2_per_m6};
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q, t) = v-v_T;
    u_C = (q-q_us)/C_T;
    // + u_ext;
    u = u_C+u_ext+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_T/2{dimensionless})/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_T/2{dimensionless})/I_T;
  enddef;

  def comp radial_L_T_module as
    var t: second {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_in: J_per_m3 {interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_T: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
    var q: m3 {init: q_init, interface: public};
    R_v = 0.01{second}/C_T;
    I_T = 1e-6{Js2_per_m6};
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q, t) = v-v_T;
    u_C = (q-q_us)/C_T;
    // + u_ext;
    u = u_C+u_ext+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_T/2{dimensionless})/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_T/2{dimensionless})/I_T;
  enddef;

  def comp posterior_interosseous_L_T_module as
    var t: second {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_in: J_per_m3 {interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_T: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
    var q: m3 {init: q_init, interface: public};
    R_v = 0.01{second}/C_T;
    I_T = 1e-6{Js2_per_m6};
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q, t) = v-v_T;
    u_C = (q-q_us)/C_T;
    // + u_ext;
    u = u_C+u_ext+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_T/2{dimensionless})/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_T/2{dimensionless})/I_T;
  enddef;

  def comp ulnar_L_II_T_module as
    var t: second {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_in: J_per_m3 {interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_T: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
    var q: m3 {init: q_init, interface: public};
    R_v = 0.01{second}/C_T;
    I_T = 1e-6{Js2_per_m6};
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q, t) = v-v_T;
    u_C = (q-q_us)/C_T;
    // + u_ext;
    u = u_C+u_ext+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_T/2{dimensionless})/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_T/2{dimensionless})/I_T;
  enddef;

  def comp posterior_intercostal_T6_R_T_module as
    var t: second {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_in: J_per_m3 {interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_T: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
    var q: m3 {init: q_init, interface: public};
    R_v = 0.01{second}/C_T;
    I_T = 1e-6{Js2_per_m6};
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q, t) = v-v_T;
    u_C = (q-q_us)/C_T;
    // + u_ext;
    u = u_C+u_ext+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_T/2{dimensionless})/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_T/2{dimensionless})/I_T;
  enddef;

  def comp posterior_intercostal_T6_L_T_module as
    var t: second {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_in: J_per_m3 {interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_T: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
    var q: m3 {init: q_init, interface: public};
    R_v = 0.01{second}/C_T;
    I_T = 1e-6{Js2_per_m6};
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q, t) = v-v_T;
    u_C = (q-q_us)/C_T;
    // + u_ext;
    u = u_C+u_ext+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_T/2{dimensionless})/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_T/2{dimensionless})/I_T;
  enddef;

  def comp posterior_intercostal_T7_R_T_module as
    var t: second {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_in: J_per_m3 {interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_T: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
    var q: m3 {init: q_init, interface: public};
    R_v = 0.01{second}/C_T;
    I_T = 1e-6{Js2_per_m6};
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q, t) = v-v_T;
    u_C = (q-q_us)/C_T;
    // + u_ext;
    u = u_C+u_ext+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_T/2{dimensionless})/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_T/2{dimensionless})/I_T;
  enddef;

  def comp posterior_intercostal_T7_L_T_module as
    var t: second {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_in: J_per_m3 {interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_T: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
    var q: m3 {init: q_init, interface: public};
    R_v = 0.01{second}/C_T;
    I_T = 1e-6{Js2_per_m6};
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q, t) = v-v_T;
    u_C = (q-q_us)/C_T;
    // + u_ext;
    u = u_C+u_ext+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_T/2{dimensionless})/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_T/2{dimensionless})/I_T;
  enddef;

  def comp common_hepatic_T_module as
    var t: second {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_in: J_per_m3 {interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_T: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
    var q: m3 {init: q_init, interface: public};
    R_v = 0.01{second}/C_T;
    I_T = 1e-6{Js2_per_m6};
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q, t) = v-v_T;
    u_C = (q-q_us)/C_T;
    // + u_ext;
    u = u_C+u_ext+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_T/2{dimensionless})/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_T/2{dimensionless})/I_T;
  enddef;

  def comp left_gastric_T_module as
    var t: second {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_in: J_per_m3 {interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_T: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
    var q: m3 {init: q_init, interface: public};
    R_v = 0.01{second}/C_T;
    I_T = 1e-6{Js2_per_m6};
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q, t) = v-v_T;
    u_C = (q-q_us)/C_T;
    // + u_ext;
    u = u_C+u_ext+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_T/2{dimensionless})/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_T/2{dimensionless})/I_T;
  enddef;

  def comp splenic_II_T_module as
    var t: second {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_in: J_per_m3 {interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_T: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
    var q: m3 {init: q_init, interface: public};
    R_v = 0.01{second}/C_T;
    I_T = 1e-6{Js2_per_m6};
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q, t) = v-v_T;
    u_C = (q-q_us)/C_T;
    // + u_ext;
    u = u_C+u_ext+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_T/2{dimensionless})/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_T/2{dimensionless})/I_T;
  enddef;

  def comp superior_mesenteric_T_module as
    var t: second {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_in: J_per_m3 {interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_T: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
    var q: m3 {init: q_init, interface: public};
    R_v = 0.01{second}/C_T;
    I_T = 1e-6{Js2_per_m6};
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q, t) = v-v_T;
    u_C = (q-q_us)/C_T;
    // + u_ext;
    u = u_C+u_ext+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_T/2{dimensionless})/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_T/2{dimensionless})/I_T;
  enddef;

  def comp renal_L_T_module as
    var t: second {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_in: J_per_m3 {interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_T: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
    var q: m3 {init: q_init, interface: public};
    R_v = 0.01{second}/C_T;
    I_T = 1e-6{Js2_per_m6};
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q, t) = v-v_T;
    u_C = (q-q_us)/C_T;
    // + u_ext;
    u = u_C+u_ext+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_T/2{dimensionless})/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_T/2{dimensionless})/I_T;
  enddef;

  def comp renal_R_T_module as
    var t: second {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_in: J_per_m3 {interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_T: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
    var q: m3 {init: q_init, interface: public};
    R_v = 0.01{second}/C_T;
    I_T = 1e-6{Js2_per_m6};
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q, t) = v-v_T;
    u_C = (q-q_us)/C_T;
    // + u_ext;
    u = u_C+u_ext+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_T/2{dimensionless})/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_T/2{dimensionless})/I_T;
  enddef;

  def comp inferior_mesenteric_T_module as
    var t: second {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_in: J_per_m3 {interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_T: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
    var q: m3 {init: q_init, interface: public};
    R_v = 0.01{second}/C_T;
    I_T = 1e-6{Js2_per_m6};
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q, t) = v-v_T;
    u_C = (q-q_us)/C_T;
    // + u_ext;
    u = u_C+u_ext+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_T/2{dimensionless})/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_T/2{dimensionless})/I_T;
  enddef;

  def comp internal_iliac_R_T_module as
    var t: second {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_in: J_per_m3 {interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_T: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
    var q: m3 {init: q_init, interface: public};
    R_v = 0.01{second}/C_T;
    I_T = 1e-6{Js2_per_m6};
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q, t) = v-v_T;
    u_C = (q-q_us)/C_T;
    // + u_ext;
    u = u_C+u_ext+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_T/2{dimensionless})/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_T/2{dimensionless})/I_T;
  enddef;

  def comp profunda_femoris_R_T_module as
    var t: second {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_in: J_per_m3 {interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_T: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
    var q: m3 {init: q_init, interface: public};
    R_v = 0.01{second}/C_T;
    I_T = 1e-6{Js2_per_m6};
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q, t) = v-v_T;
    u_C = (q-q_us)/C_T;
    // + u_ext;
    u = u_C+u_ext+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_T/2{dimensionless})/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_T/2{dimensionless})/I_T;
  enddef;

  def comp anterior_tibial_R_T_module as
    var t: second {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_in: J_per_m3 {interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_T: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
    var q: m3 {init: q_init, interface: public};
    R_v = 0.01{second}/C_T;
    I_T = 1e-6{Js2_per_m6};
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q, t) = v-v_T;
    u_C = (q-q_us)/C_T;
    // + u_ext;
    u = u_C+u_ext+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_T/2{dimensionless})/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_T/2{dimensionless})/I_T;
  enddef;

  def comp posterior_tibial_R_T_module as
    var t: second {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_in: J_per_m3 {interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_T: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
    var q: m3 {init: q_init, interface: public};
    R_v = 0.01{second}/C_T;
    I_T = 1e-6{Js2_per_m6};
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q, t) = v-v_T;
    u_C = (q-q_us)/C_T;
    // + u_ext;
    u = u_C+u_ext+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_T/2{dimensionless})/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_T/2{dimensionless})/I_T;
  enddef;

  def comp internal_iliac_L_T_module as
    var t: second {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_in: J_per_m3 {interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_T: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
    var q: m3 {init: q_init, interface: public};
    R_v = 0.01{second}/C_T;
    I_T = 1e-6{Js2_per_m6};
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q, t) = v-v_T;
    u_C = (q-q_us)/C_T;
    // + u_ext;
    u = u_C+u_ext+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_T/2{dimensionless})/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_T/2{dimensionless})/I_T;
  enddef;

  def comp profunda_femoris_L_T_module as
    var t: second {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_in: J_per_m3 {interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_T: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
    var q: m3 {init: q_init, interface: public};
    R_v = 0.01{second}/C_T;
    I_T = 1e-6{Js2_per_m6};
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q, t) = v-v_T;
    u_C = (q-q_us)/C_T;
    // + u_ext;
    u = u_C+u_ext+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_T/2{dimensionless})/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_T/2{dimensionless})/I_T;
  enddef;

  def comp anterior_tibial_L_T_module as
    var t: second {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_in: J_per_m3 {interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_T: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
    var q: m3 {init: q_init, interface: public};
    R_v = 0.01{second}/C_T;
    I_T = 1e-6{Js2_per_m6};
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q, t) = v-v_T;
    u_C = (q-q_us)/C_T;
    // + u_ext;
    u = u_C+u_ext+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_T/2{dimensionless})/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_T/2{dimensionless})/I_T;
  enddef;

  def comp posterior_tibial_L_T_module as
    var t: second {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_in: J_per_m3 {interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_T: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
    var q: m3 {init: q_init, interface: public};
    R_v = 0.01{second}/C_T;
    I_T = 1e-6{Js2_per_m6};
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q, t) = v-v_T;
    u_C = (q-q_us)/C_T;
    // + u_ext;
    u = u_C+u_ext+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_T/2{dimensionless})/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_T/2{dimensionless})/I_T;
  enddef;

  def comp K_tube_aortic_arch_I_module as
    var t: second {interface: public};
    var l: metre {interface: public};
    var r_0: metre {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
    var Gamma: Js_per_m3 {interface: public};
    var SMvolfrac_art: dimensionless {interface: public};
    var nu: dimensionless {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var h: metre {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    // Gamma is the wall viscosity
    // evaluated as the product of the viscoelastic parameter K_m and the volume fraction of smooth muscle SMvolfrac
    // Gamma = 0.1{dimensionless}*K_m;
    Gamma = SMvolfrac_art*K_m;
    K_tube = E*h/((1{dimensionless}-sqr(nu))*r_0);
    K_tube_visco = 2{dimensionless}/3{dimensionless}*Gamma*h/(l*pi*pow(r_0, 3{dimensionless}));
  enddef;

  def comp K_tube_brachiocephalic_trunk_module as
    var t: second {interface: public};
    var l: metre {interface: public};
    var r_0: metre {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
    var Gamma: Js_per_m3 {interface: public};
    var SMvolfrac_art: dimensionless {interface: public};
    var nu: dimensionless {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var h: metre {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    // Gamma is the wall viscosity
    // evaluated as the product of the viscoelastic parameter K_m and the volume fraction of smooth muscle SMvolfrac
    // Gamma = 0.1{dimensionless}*K_m;
    Gamma = SMvolfrac_art*K_m;
    K_tube = E*h/((1{dimensionless}-sqr(nu))*r_0);
    K_tube_visco = 2{dimensionless}/3{dimensionless}*Gamma*h/(l*pi*pow(r_0, 3{dimensionless}));
  enddef;

  def comp K_tube_aortic_arch_II_module as
    var t: second {interface: public};
    var l: metre {interface: public};
    var r_0: metre {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
    var Gamma: Js_per_m3 {interface: public};
    var SMvolfrac_art: dimensionless {interface: public};
    var nu: dimensionless {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var h: metre {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    // Gamma is the wall viscosity
    // evaluated as the product of the viscoelastic parameter K_m and the volume fraction of smooth muscle SMvolfrac
    // Gamma = 0.1{dimensionless}*K_m;
    Gamma = SMvolfrac_art*K_m;
    K_tube = E*h/((1{dimensionless}-sqr(nu))*r_0);
    K_tube_visco = 2{dimensionless}/3{dimensionless}*Gamma*h/(l*pi*pow(r_0, 3{dimensionless}));
  enddef;

  def comp K_tube_subclavian_R_I_module as
    var t: second {interface: public};
    var l: metre {interface: public};
    var r_0: metre {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
    var Gamma: Js_per_m3 {interface: public};
    var SMvolfrac_art: dimensionless {interface: public};
    var nu: dimensionless {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var h: metre {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    // Gamma is the wall viscosity
    // evaluated as the product of the viscoelastic parameter K_m and the volume fraction of smooth muscle SMvolfrac
    // Gamma = 0.1{dimensionless}*K_m;
    Gamma = SMvolfrac_art*K_m;
    K_tube = E*h/((1{dimensionless}-sqr(nu))*r_0);
    K_tube_visco = 2{dimensionless}/3{dimensionless}*Gamma*h/(l*pi*pow(r_0, 3{dimensionless}));
  enddef;

  def comp K_tube_common_carotid_R_module as
    var t: second {interface: public};
    var l: metre {interface: public};
    var r_0: metre {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
    var Gamma: Js_per_m3 {interface: public};
    var SMvolfrac_art: dimensionless {interface: public};
    var nu: dimensionless {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var h: metre {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    // Gamma is the wall viscosity
    // evaluated as the product of the viscoelastic parameter K_m and the volume fraction of smooth muscle SMvolfrac
    // Gamma = 0.1{dimensionless}*K_m;
    Gamma = SMvolfrac_art*K_m;
    K_tube = E*h/((1{dimensionless}-sqr(nu))*r_0);
    K_tube_visco = 2{dimensionless}/3{dimensionless}*Gamma*h/(l*pi*pow(r_0, 3{dimensionless}));
  enddef;

  def comp K_tube_vertebral_R_module as
    var t: second {interface: public};
    var l: metre {interface: public};
    var r_0: metre {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
    var Gamma: Js_per_m3 {interface: public};
    var SMvolfrac_art: dimensionless {interface: public};
    var nu: dimensionless {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var h: metre {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    // Gamma is the wall viscosity
    // evaluated as the product of the viscoelastic parameter K_m and the volume fraction of smooth muscle SMvolfrac
    // Gamma = 0.1{dimensionless}*K_m;
    Gamma = SMvolfrac_art*K_m;
    K_tube = E*h/((1{dimensionless}-sqr(nu))*r_0);
    K_tube_visco = 2{dimensionless}/3{dimensionless}*Gamma*h/(l*pi*pow(r_0, 3{dimensionless}));
  enddef;

  def comp K_tube_subclavian_R_II_module as
    var t: second {interface: public};
    var l: metre {interface: public};
    var r_0: metre {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
    var Gamma: Js_per_m3 {interface: public};
    var SMvolfrac_art: dimensionless {interface: public};
    var nu: dimensionless {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var h: metre {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    // Gamma is the wall viscosity
    // evaluated as the product of the viscoelastic parameter K_m and the volume fraction of smooth muscle SMvolfrac
    // Gamma = 0.1{dimensionless}*K_m;
    Gamma = SMvolfrac_art*K_m;
    K_tube = E*h/((1{dimensionless}-sqr(nu))*r_0);
    K_tube_visco = 2{dimensionless}/3{dimensionless}*Gamma*h/(l*pi*pow(r_0, 3{dimensionless}));
  enddef;

  def comp K_tube_axillary_R_module as
    var t: second {interface: public};
    var l: metre {interface: public};
    var r_0: metre {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
    var Gamma: Js_per_m3 {interface: public};
    var SMvolfrac_art: dimensionless {interface: public};
    var nu: dimensionless {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var h: metre {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    // Gamma is the wall viscosity
    // evaluated as the product of the viscoelastic parameter K_m and the volume fraction of smooth muscle SMvolfrac
    // Gamma = 0.1{dimensionless}*K_m;
    Gamma = SMvolfrac_art*K_m;
    K_tube = E*h/((1{dimensionless}-sqr(nu))*r_0);
    K_tube_visco = 2{dimensionless}/3{dimensionless}*Gamma*h/(l*pi*pow(r_0, 3{dimensionless}));
  enddef;

  def comp K_tube_brachial_R_module as
    var t: second {interface: public};
    var l: metre {interface: public};
    var r_0: metre {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
    var Gamma: Js_per_m3 {interface: public};
    var SMvolfrac_art: dimensionless {interface: public};
    var nu: dimensionless {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var h: metre {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    // Gamma is the wall viscosity
    // evaluated as the product of the viscoelastic parameter K_m and the volume fraction of smooth muscle SMvolfrac
    // Gamma = 0.1{dimensionless}*K_m;
    Gamma = SMvolfrac_art*K_m;
    K_tube = E*h/((1{dimensionless}-sqr(nu))*r_0);
    K_tube_visco = 2{dimensionless}/3{dimensionless}*Gamma*h/(l*pi*pow(r_0, 3{dimensionless}));
  enddef;

  def comp K_tube_radial_R_module as
    var t: second {interface: public};
    var l: metre {interface: public};
    var r_0: metre {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
    var Gamma: Js_per_m3 {interface: public};
    var SMvolfrac_art: dimensionless {interface: public};
    var nu: dimensionless {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var h: metre {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    // Gamma is the wall viscosity
    // evaluated as the product of the viscoelastic parameter K_m and the volume fraction of smooth muscle SMvolfrac
    // Gamma = 0.1{dimensionless}*K_m;
    Gamma = SMvolfrac_art*K_m;
    K_tube = E*h/((1{dimensionless}-sqr(nu))*r_0);
    K_tube_visco = 2{dimensionless}/3{dimensionless}*Gamma*h/(l*pi*pow(r_0, 3{dimensionless}));
  enddef;

  def comp K_tube_ulnar_R_I_module as
    var t: second {interface: public};
    var l: metre {interface: public};
    var r_0: metre {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
    var Gamma: Js_per_m3 {interface: public};
    var SMvolfrac_art: dimensionless {interface: public};
    var nu: dimensionless {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var h: metre {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    // Gamma is the wall viscosity
    // evaluated as the product of the viscoelastic parameter K_m and the volume fraction of smooth muscle SMvolfrac
    // Gamma = 0.1{dimensionless}*K_m;
    Gamma = SMvolfrac_art*K_m;
    K_tube = E*h/((1{dimensionless}-sqr(nu))*r_0);
    K_tube_visco = 2{dimensionless}/3{dimensionless}*Gamma*h/(l*pi*pow(r_0, 3{dimensionless}));
  enddef;

  def comp K_tube_common_interosseous_R_module as
    var t: second {interface: public};
    var l: metre {interface: public};
    var r_0: metre {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
    var Gamma: Js_per_m3 {interface: public};
    var SMvolfrac_art: dimensionless {interface: public};
    var nu: dimensionless {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var h: metre {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    // Gamma is the wall viscosity
    // evaluated as the product of the viscoelastic parameter K_m and the volume fraction of smooth muscle SMvolfrac
    // Gamma = 0.1{dimensionless}*K_m;
    Gamma = SMvolfrac_art*K_m;
    K_tube = E*h/((1{dimensionless}-sqr(nu))*r_0);
    K_tube_visco = 2{dimensionless}/3{dimensionless}*Gamma*h/(l*pi*pow(r_0, 3{dimensionless}));
  enddef;

  def comp K_tube_ulnar_R_II_module as
    var t: second {interface: public};
    var l: metre {interface: public};
    var r_0: metre {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
    var Gamma: Js_per_m3 {interface: public};
    var SMvolfrac_art: dimensionless {interface: public};
    var nu: dimensionless {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var h: metre {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    // Gamma is the wall viscosity
    // evaluated as the product of the viscoelastic parameter K_m and the volume fraction of smooth muscle SMvolfrac
    // Gamma = 0.1{dimensionless}*K_m;
    Gamma = SMvolfrac_art*K_m;
    K_tube = E*h/((1{dimensionless}-sqr(nu))*r_0);
    K_tube_visco = 2{dimensionless}/3{dimensionless}*Gamma*h/(l*pi*pow(r_0, 3{dimensionless}));
  enddef;

  def comp K_tube_posterior_interosseous_R_module as
    var t: second {interface: public};
    var l: metre {interface: public};
    var r_0: metre {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
    var Gamma: Js_per_m3 {interface: public};
    var SMvolfrac_art: dimensionless {interface: public};
    var nu: dimensionless {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var h: metre {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    // Gamma is the wall viscosity
    // evaluated as the product of the viscoelastic parameter K_m and the volume fraction of smooth muscle SMvolfrac
    // Gamma = 0.1{dimensionless}*K_m;
    Gamma = SMvolfrac_art*K_m;
    K_tube = E*h/((1{dimensionless}-sqr(nu))*r_0);
    K_tube_visco = 2{dimensionless}/3{dimensionless}*Gamma*h/(l*pi*pow(r_0, 3{dimensionless}));
  enddef;

  def comp K_tube_external_carotid_R_module as
    var t: second {interface: public};
    var l: metre {interface: public};
    var r_0: metre {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
    var Gamma: Js_per_m3 {interface: public};
    var SMvolfrac_art: dimensionless {interface: public};
    var nu: dimensionless {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var h: metre {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    // Gamma is the wall viscosity
    // evaluated as the product of the viscoelastic parameter K_m and the volume fraction of smooth muscle SMvolfrac
    // Gamma = 0.1{dimensionless}*K_m;
    Gamma = SMvolfrac_art*K_m;
    K_tube = E*h/((1{dimensionless}-sqr(nu))*r_0);
    K_tube_visco = 2{dimensionless}/3{dimensionless}*Gamma*h/(l*pi*pow(r_0, 3{dimensionless}));
  enddef;

  def comp K_tube_internal_carotid_R_module as
    var t: second {interface: public};
    var l: metre {interface: public};
    var r_0: metre {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
    var Gamma: Js_per_m3 {interface: public};
    var SMvolfrac_art: dimensionless {interface: public};
    var nu: dimensionless {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var h: metre {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    // Gamma is the wall viscosity
    // evaluated as the product of the viscoelastic parameter K_m and the volume fraction of smooth muscle SMvolfrac
    // Gamma = 0.1{dimensionless}*K_m;
    Gamma = SMvolfrac_art*K_m;
    K_tube = E*h/((1{dimensionless}-sqr(nu))*r_0);
    K_tube_visco = 2{dimensionless}/3{dimensionless}*Gamma*h/(l*pi*pow(r_0, 3{dimensionless}));
  enddef;

  def comp K_tube_common_carotid_L_module as
    var t: second {interface: public};
    var l: metre {interface: public};
    var r_0: metre {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
    var Gamma: Js_per_m3 {interface: public};
    var SMvolfrac_art: dimensionless {interface: public};
    var nu: dimensionless {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var h: metre {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    // Gamma is the wall viscosity
    // evaluated as the product of the viscoelastic parameter K_m and the volume fraction of smooth muscle SMvolfrac
    // Gamma = 0.1{dimensionless}*K_m;
    Gamma = SMvolfrac_art*K_m;
    K_tube = E*h/((1{dimensionless}-sqr(nu))*r_0);
    K_tube_visco = 2{dimensionless}/3{dimensionless}*Gamma*h/(l*pi*pow(r_0, 3{dimensionless}));
  enddef;

  def comp K_tube_aortic_arch_III_module as
    var t: second {interface: public};
    var l: metre {interface: public};
    var r_0: metre {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
    var Gamma: Js_per_m3 {interface: public};
    var SMvolfrac_art: dimensionless {interface: public};
    var nu: dimensionless {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var h: metre {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    // Gamma is the wall viscosity
    // evaluated as the product of the viscoelastic parameter K_m and the volume fraction of smooth muscle SMvolfrac
    // Gamma = 0.1{dimensionless}*K_m;
    Gamma = SMvolfrac_art*K_m;
    K_tube = E*h/((1{dimensionless}-sqr(nu))*r_0);
    K_tube_visco = 2{dimensionless}/3{dimensionless}*Gamma*h/(l*pi*pow(r_0, 3{dimensionless}));
  enddef;

  def comp K_tube_external_carotid_L_module as
    var t: second {interface: public};
    var l: metre {interface: public};
    var r_0: metre {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
    var Gamma: Js_per_m3 {interface: public};
    var SMvolfrac_art: dimensionless {interface: public};
    var nu: dimensionless {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var h: metre {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    // Gamma is the wall viscosity
    // evaluated as the product of the viscoelastic parameter K_m and the volume fraction of smooth muscle SMvolfrac
    // Gamma = 0.1{dimensionless}*K_m;
    Gamma = SMvolfrac_art*K_m;
    K_tube = E*h/((1{dimensionless}-sqr(nu))*r_0);
    K_tube_visco = 2{dimensionless}/3{dimensionless}*Gamma*h/(l*pi*pow(r_0, 3{dimensionless}));
  enddef;

  def comp K_tube_internal_carotid_L_module as
    var t: second {interface: public};
    var l: metre {interface: public};
    var r_0: metre {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
    var Gamma: Js_per_m3 {interface: public};
    var SMvolfrac_art: dimensionless {interface: public};
    var nu: dimensionless {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var h: metre {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    // Gamma is the wall viscosity
    // evaluated as the product of the viscoelastic parameter K_m and the volume fraction of smooth muscle SMvolfrac
    // Gamma = 0.1{dimensionless}*K_m;
    Gamma = SMvolfrac_art*K_m;
    K_tube = E*h/((1{dimensionless}-sqr(nu))*r_0);
    K_tube_visco = 2{dimensionless}/3{dimensionless}*Gamma*h/(l*pi*pow(r_0, 3{dimensionless}));
  enddef;

  def comp K_tube_subclavian_L_I_module as
    var t: second {interface: public};
    var l: metre {interface: public};
    var r_0: metre {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
    var Gamma: Js_per_m3 {interface: public};
    var SMvolfrac_art: dimensionless {interface: public};
    var nu: dimensionless {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var h: metre {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    // Gamma is the wall viscosity
    // evaluated as the product of the viscoelastic parameter K_m and the volume fraction of smooth muscle SMvolfrac
    // Gamma = 0.1{dimensionless}*K_m;
    Gamma = SMvolfrac_art*K_m;
    K_tube = E*h/((1{dimensionless}-sqr(nu))*r_0);
    K_tube_visco = 2{dimensionless}/3{dimensionless}*Gamma*h/(l*pi*pow(r_0, 3{dimensionless}));
  enddef;

  def comp K_tube_aortic_arch_IV_module as
    var t: second {interface: public};
    var l: metre {interface: public};
    var r_0: metre {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
    var Gamma: Js_per_m3 {interface: public};
    var SMvolfrac_art: dimensionless {interface: public};
    var nu: dimensionless {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var h: metre {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    // Gamma is the wall viscosity
    // evaluated as the product of the viscoelastic parameter K_m and the volume fraction of smooth muscle SMvolfrac
    // Gamma = 0.1{dimensionless}*K_m;
    Gamma = SMvolfrac_art*K_m;
    K_tube = E*h/((1{dimensionless}-sqr(nu))*r_0);
    K_tube_visco = 2{dimensionless}/3{dimensionless}*Gamma*h/(l*pi*pow(r_0, 3{dimensionless}));
  enddef;

  def comp K_tube_vertebral_L_module as
    var t: second {interface: public};
    var l: metre {interface: public};
    var r_0: metre {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
    var Gamma: Js_per_m3 {interface: public};
    var SMvolfrac_art: dimensionless {interface: public};
    var nu: dimensionless {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var h: metre {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    // Gamma is the wall viscosity
    // evaluated as the product of the viscoelastic parameter K_m and the volume fraction of smooth muscle SMvolfrac
    // Gamma = 0.1{dimensionless}*K_m;
    Gamma = SMvolfrac_art*K_m;
    K_tube = E*h/((1{dimensionless}-sqr(nu))*r_0);
    K_tube_visco = 2{dimensionless}/3{dimensionless}*Gamma*h/(l*pi*pow(r_0, 3{dimensionless}));
  enddef;

  def comp K_tube_subclavian_L_II_module as
    var t: second {interface: public};
    var l: metre {interface: public};
    var r_0: metre {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
    var Gamma: Js_per_m3 {interface: public};
    var SMvolfrac_art: dimensionless {interface: public};
    var nu: dimensionless {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var h: metre {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    // Gamma is the wall viscosity
    // evaluated as the product of the viscoelastic parameter K_m and the volume fraction of smooth muscle SMvolfrac
    // Gamma = 0.1{dimensionless}*K_m;
    Gamma = SMvolfrac_art*K_m;
    K_tube = E*h/((1{dimensionless}-sqr(nu))*r_0);
    K_tube_visco = 2{dimensionless}/3{dimensionless}*Gamma*h/(l*pi*pow(r_0, 3{dimensionless}));
  enddef;

  def comp K_tube_axillary_L_module as
    var t: second {interface: public};
    var l: metre {interface: public};
    var r_0: metre {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
    var Gamma: Js_per_m3 {interface: public};
    var SMvolfrac_art: dimensionless {interface: public};
    var nu: dimensionless {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var h: metre {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    // Gamma is the wall viscosity
    // evaluated as the product of the viscoelastic parameter K_m and the volume fraction of smooth muscle SMvolfrac
    // Gamma = 0.1{dimensionless}*K_m;
    Gamma = SMvolfrac_art*K_m;
    K_tube = E*h/((1{dimensionless}-sqr(nu))*r_0);
    K_tube_visco = 2{dimensionless}/3{dimensionless}*Gamma*h/(l*pi*pow(r_0, 3{dimensionless}));
  enddef;

  def comp K_tube_brachial_L_module as
    var t: second {interface: public};
    var l: metre {interface: public};
    var r_0: metre {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
    var Gamma: Js_per_m3 {interface: public};
    var SMvolfrac_art: dimensionless {interface: public};
    var nu: dimensionless {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var h: metre {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    // Gamma is the wall viscosity
    // evaluated as the product of the viscoelastic parameter K_m and the volume fraction of smooth muscle SMvolfrac
    // Gamma = 0.1{dimensionless}*K_m;
    Gamma = SMvolfrac_art*K_m;
    K_tube = E*h/((1{dimensionless}-sqr(nu))*r_0);
    K_tube_visco = 2{dimensionless}/3{dimensionless}*Gamma*h/(l*pi*pow(r_0, 3{dimensionless}));
  enddef;

  def comp K_tube_radial_L_module as
    var t: second {interface: public};
    var l: metre {interface: public};
    var r_0: metre {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
    var Gamma: Js_per_m3 {interface: public};
    var SMvolfrac_art: dimensionless {interface: public};
    var nu: dimensionless {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var h: metre {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    // Gamma is the wall viscosity
    // evaluated as the product of the viscoelastic parameter K_m and the volume fraction of smooth muscle SMvolfrac
    // Gamma = 0.1{dimensionless}*K_m;
    Gamma = SMvolfrac_art*K_m;
    K_tube = E*h/((1{dimensionless}-sqr(nu))*r_0);
    K_tube_visco = 2{dimensionless}/3{dimensionless}*Gamma*h/(l*pi*pow(r_0, 3{dimensionless}));
  enddef;

  def comp K_tube_ulnar_L_I_module as
    var t: second {interface: public};
    var l: metre {interface: public};
    var r_0: metre {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
    var Gamma: Js_per_m3 {interface: public};
    var SMvolfrac_art: dimensionless {interface: public};
    var nu: dimensionless {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var h: metre {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    // Gamma is the wall viscosity
    // evaluated as the product of the viscoelastic parameter K_m and the volume fraction of smooth muscle SMvolfrac
    // Gamma = 0.1{dimensionless}*K_m;
    Gamma = SMvolfrac_art*K_m;
    K_tube = E*h/((1{dimensionless}-sqr(nu))*r_0);
    K_tube_visco = 2{dimensionless}/3{dimensionless}*Gamma*h/(l*pi*pow(r_0, 3{dimensionless}));
  enddef;

  def comp K_tube_common_interosseous_L_module as
    var t: second {interface: public};
    var l: metre {interface: public};
    var r_0: metre {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
    var Gamma: Js_per_m3 {interface: public};
    var SMvolfrac_art: dimensionless {interface: public};
    var nu: dimensionless {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var h: metre {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    // Gamma is the wall viscosity
    // evaluated as the product of the viscoelastic parameter K_m and the volume fraction of smooth muscle SMvolfrac
    // Gamma = 0.1{dimensionless}*K_m;
    Gamma = SMvolfrac_art*K_m;
    K_tube = E*h/((1{dimensionless}-sqr(nu))*r_0);
    K_tube_visco = 2{dimensionless}/3{dimensionless}*Gamma*h/(l*pi*pow(r_0, 3{dimensionless}));
  enddef;

  def comp K_tube_ulnar_L_II_module as
    var t: second {interface: public};
    var l: metre {interface: public};
    var r_0: metre {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
    var Gamma: Js_per_m3 {interface: public};
    var SMvolfrac_art: dimensionless {interface: public};
    var nu: dimensionless {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var h: metre {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    // Gamma is the wall viscosity
    // evaluated as the product of the viscoelastic parameter K_m and the volume fraction of smooth muscle SMvolfrac
    // Gamma = 0.1{dimensionless}*K_m;
    Gamma = SMvolfrac_art*K_m;
    K_tube = E*h/((1{dimensionless}-sqr(nu))*r_0);
    K_tube_visco = 2{dimensionless}/3{dimensionless}*Gamma*h/(l*pi*pow(r_0, 3{dimensionless}));
  enddef;

  def comp K_tube_posterior_interosseous_L_module as
    var t: second {interface: public};
    var l: metre {interface: public};
    var r_0: metre {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
    var Gamma: Js_per_m3 {interface: public};
    var SMvolfrac_art: dimensionless {interface: public};
    var nu: dimensionless {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var h: metre {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    // Gamma is the wall viscosity
    // evaluated as the product of the viscoelastic parameter K_m and the volume fraction of smooth muscle SMvolfrac
    // Gamma = 0.1{dimensionless}*K_m;
    Gamma = SMvolfrac_art*K_m;
    K_tube = E*h/((1{dimensionless}-sqr(nu))*r_0);
    K_tube_visco = 2{dimensionless}/3{dimensionless}*Gamma*h/(l*pi*pow(r_0, 3{dimensionless}));
  enddef;

  def comp K_tube_thoracic_aorta_I_module as
    var t: second {interface: public};
    var l: metre {interface: public};
    var r_0: metre {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
    var Gamma: Js_per_m3 {interface: public};
    var SMvolfrac_art: dimensionless {interface: public};
    var nu: dimensionless {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var h: metre {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    // Gamma is the wall viscosity
    // evaluated as the product of the viscoelastic parameter K_m and the volume fraction of smooth muscle SMvolfrac
    // Gamma = 0.1{dimensionless}*K_m;
    Gamma = SMvolfrac_art*K_m;
    K_tube = E*h/((1{dimensionless}-sqr(nu))*r_0);
    K_tube_visco = 2{dimensionless}/3{dimensionless}*Gamma*h/(l*pi*pow(r_0, 3{dimensionless}));
  enddef;

  def comp K_tube_posterior_intercostal_T6_R_module as
    var t: second {interface: public};
    var l: metre {interface: public};
    var r_0: metre {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
    var Gamma: Js_per_m3 {interface: public};
    var SMvolfrac_art: dimensionless {interface: public};
    var nu: dimensionless {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var h: metre {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    // Gamma is the wall viscosity
    // evaluated as the product of the viscoelastic parameter K_m and the volume fraction of smooth muscle SMvolfrac
    // Gamma = 0.1{dimensionless}*K_m;
    Gamma = SMvolfrac_art*K_m;
    K_tube = E*h/((1{dimensionless}-sqr(nu))*r_0);
    K_tube_visco = 2{dimensionless}/3{dimensionless}*Gamma*h/(l*pi*pow(r_0, 3{dimensionless}));
  enddef;

  def comp K_tube_thoracic_aorta_II_module as
    var t: second {interface: public};
    var l: metre {interface: public};
    var r_0: metre {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
    var Gamma: Js_per_m3 {interface: public};
    var SMvolfrac_art: dimensionless {interface: public};
    var nu: dimensionless {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var h: metre {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    // Gamma is the wall viscosity
    // evaluated as the product of the viscoelastic parameter K_m and the volume fraction of smooth muscle SMvolfrac
    // Gamma = 0.1{dimensionless}*K_m;
    Gamma = SMvolfrac_art*K_m;
    K_tube = E*h/((1{dimensionless}-sqr(nu))*r_0);
    K_tube_visco = 2{dimensionless}/3{dimensionless}*Gamma*h/(l*pi*pow(r_0, 3{dimensionless}));
  enddef;

  def comp K_tube_posterior_intercostal_T6_L_module as
    var t: second {interface: public};
    var l: metre {interface: public};
    var r_0: metre {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
    var Gamma: Js_per_m3 {interface: public};
    var SMvolfrac_art: dimensionless {interface: public};
    var nu: dimensionless {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var h: metre {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    // Gamma is the wall viscosity
    // evaluated as the product of the viscoelastic parameter K_m and the volume fraction of smooth muscle SMvolfrac
    // Gamma = 0.1{dimensionless}*K_m;
    Gamma = SMvolfrac_art*K_m;
    K_tube = E*h/((1{dimensionless}-sqr(nu))*r_0);
    K_tube_visco = 2{dimensionless}/3{dimensionless}*Gamma*h/(l*pi*pow(r_0, 3{dimensionless}));
  enddef;

  def comp K_tube_thoracic_aorta_III_module as
    var t: second {interface: public};
    var l: metre {interface: public};
    var r_0: metre {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
    var Gamma: Js_per_m3 {interface: public};
    var SMvolfrac_art: dimensionless {interface: public};
    var nu: dimensionless {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var h: metre {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    // Gamma is the wall viscosity
    // evaluated as the product of the viscoelastic parameter K_m and the volume fraction of smooth muscle SMvolfrac
    // Gamma = 0.1{dimensionless}*K_m;
    Gamma = SMvolfrac_art*K_m;
    K_tube = E*h/((1{dimensionless}-sqr(nu))*r_0);
    K_tube_visco = 2{dimensionless}/3{dimensionless}*Gamma*h/(l*pi*pow(r_0, 3{dimensionless}));
  enddef;

  def comp K_tube_posterior_intercostal_T7_R_module as
    var t: second {interface: public};
    var l: metre {interface: public};
    var r_0: metre {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
    var Gamma: Js_per_m3 {interface: public};
    var SMvolfrac_art: dimensionless {interface: public};
    var nu: dimensionless {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var h: metre {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    // Gamma is the wall viscosity
    // evaluated as the product of the viscoelastic parameter K_m and the volume fraction of smooth muscle SMvolfrac
    // Gamma = 0.1{dimensionless}*K_m;
    Gamma = SMvolfrac_art*K_m;
    K_tube = E*h/((1{dimensionless}-sqr(nu))*r_0);
    K_tube_visco = 2{dimensionless}/3{dimensionless}*Gamma*h/(l*pi*pow(r_0, 3{dimensionless}));
  enddef;

  def comp K_tube_thoracic_aorta_IV_module as
    var t: second {interface: public};
    var l: metre {interface: public};
    var r_0: metre {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
    var Gamma: Js_per_m3 {interface: public};
    var SMvolfrac_art: dimensionless {interface: public};
    var nu: dimensionless {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var h: metre {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    // Gamma is the wall viscosity
    // evaluated as the product of the viscoelastic parameter K_m and the volume fraction of smooth muscle SMvolfrac
    // Gamma = 0.1{dimensionless}*K_m;
    Gamma = SMvolfrac_art*K_m;
    K_tube = E*h/((1{dimensionless}-sqr(nu))*r_0);
    K_tube_visco = 2{dimensionless}/3{dimensionless}*Gamma*h/(l*pi*pow(r_0, 3{dimensionless}));
  enddef;

  def comp K_tube_posterior_intercostal_T7_L_module as
    var t: second {interface: public};
    var l: metre {interface: public};
    var r_0: metre {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
    var Gamma: Js_per_m3 {interface: public};
    var SMvolfrac_art: dimensionless {interface: public};
    var nu: dimensionless {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var h: metre {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    // Gamma is the wall viscosity
    // evaluated as the product of the viscoelastic parameter K_m and the volume fraction of smooth muscle SMvolfrac
    // Gamma = 0.1{dimensionless}*K_m;
    Gamma = SMvolfrac_art*K_m;
    K_tube = E*h/((1{dimensionless}-sqr(nu))*r_0);
    K_tube_visco = 2{dimensionless}/3{dimensionless}*Gamma*h/(l*pi*pow(r_0, 3{dimensionless}));
  enddef;

  def comp K_tube_thoracic_aorta_V_module as
    var t: second {interface: public};
    var l: metre {interface: public};
    var r_0: metre {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
    var Gamma: Js_per_m3 {interface: public};
    var SMvolfrac_art: dimensionless {interface: public};
    var nu: dimensionless {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var h: metre {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    // Gamma is the wall viscosity
    // evaluated as the product of the viscoelastic parameter K_m and the volume fraction of smooth muscle SMvolfrac
    // Gamma = 0.1{dimensionless}*K_m;
    Gamma = SMvolfrac_art*K_m;
    K_tube = E*h/((1{dimensionless}-sqr(nu))*r_0);
    K_tube_visco = 2{dimensionless}/3{dimensionless}*Gamma*h/(l*pi*pow(r_0, 3{dimensionless}));
  enddef;

  def comp K_tube_thoracic_aorta_VI_module as
    var t: second {interface: public};
    var l: metre {interface: public};
    var r_0: metre {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
    var Gamma: Js_per_m3 {interface: public};
    var SMvolfrac_art: dimensionless {interface: public};
    var nu: dimensionless {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var h: metre {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    // Gamma is the wall viscosity
    // evaluated as the product of the viscoelastic parameter K_m and the volume fraction of smooth muscle SMvolfrac
    // Gamma = 0.1{dimensionless}*K_m;
    Gamma = SMvolfrac_art*K_m;
    K_tube = E*h/((1{dimensionless}-sqr(nu))*r_0);
    K_tube_visco = 2{dimensionless}/3{dimensionless}*Gamma*h/(l*pi*pow(r_0, 3{dimensionless}));
  enddef;

  def comp K_tube_celiac_trunk_module as
    var t: second {interface: public};
    var l: metre {interface: public};
    var r_0: metre {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
    var Gamma: Js_per_m3 {interface: public};
    var SMvolfrac_art: dimensionless {interface: public};
    var nu: dimensionless {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var h: metre {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    // Gamma is the wall viscosity
    // evaluated as the product of the viscoelastic parameter K_m and the volume fraction of smooth muscle SMvolfrac
    // Gamma = 0.1{dimensionless}*K_m;
    Gamma = SMvolfrac_art*K_m;
    K_tube = E*h/((1{dimensionless}-sqr(nu))*r_0);
    K_tube_visco = 2{dimensionless}/3{dimensionless}*Gamma*h/(l*pi*pow(r_0, 3{dimensionless}));
  enddef;

  def comp K_tube_abdominal_aorta_I_module as
    var t: second {interface: public};
    var l: metre {interface: public};
    var r_0: metre {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
    var Gamma: Js_per_m3 {interface: public};
    var SMvolfrac_art: dimensionless {interface: public};
    var nu: dimensionless {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var h: metre {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    // Gamma is the wall viscosity
    // evaluated as the product of the viscoelastic parameter K_m and the volume fraction of smooth muscle SMvolfrac
    // Gamma = 0.1{dimensionless}*K_m;
    Gamma = SMvolfrac_art*K_m;
    K_tube = E*h/((1{dimensionless}-sqr(nu))*r_0);
    K_tube_visco = 2{dimensionless}/3{dimensionless}*Gamma*h/(l*pi*pow(r_0, 3{dimensionless}));
  enddef;

  def comp K_tube_common_hepatic_module as
    var t: second {interface: public};
    var l: metre {interface: public};
    var r_0: metre {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
    var Gamma: Js_per_m3 {interface: public};
    var SMvolfrac_art: dimensionless {interface: public};
    var nu: dimensionless {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var h: metre {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    // Gamma is the wall viscosity
    // evaluated as the product of the viscoelastic parameter K_m and the volume fraction of smooth muscle SMvolfrac
    // Gamma = 0.1{dimensionless}*K_m;
    Gamma = SMvolfrac_art*K_m;
    K_tube = E*h/((1{dimensionless}-sqr(nu))*r_0);
    K_tube_visco = 2{dimensionless}/3{dimensionless}*Gamma*h/(l*pi*pow(r_0, 3{dimensionless}));
  enddef;

  def comp K_tube_splenic_I_module as
    var t: second {interface: public};
    var l: metre {interface: public};
    var r_0: metre {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
    var Gamma: Js_per_m3 {interface: public};
    var SMvolfrac_art: dimensionless {interface: public};
    var nu: dimensionless {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var h: metre {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    // Gamma is the wall viscosity
    // evaluated as the product of the viscoelastic parameter K_m and the volume fraction of smooth muscle SMvolfrac
    // Gamma = 0.1{dimensionless}*K_m;
    Gamma = SMvolfrac_art*K_m;
    K_tube = E*h/((1{dimensionless}-sqr(nu))*r_0);
    K_tube_visco = 2{dimensionless}/3{dimensionless}*Gamma*h/(l*pi*pow(r_0, 3{dimensionless}));
  enddef;

  def comp K_tube_left_gastric_module as
    var t: second {interface: public};
    var l: metre {interface: public};
    var r_0: metre {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
    var Gamma: Js_per_m3 {interface: public};
    var SMvolfrac_art: dimensionless {interface: public};
    var nu: dimensionless {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var h: metre {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    // Gamma is the wall viscosity
    // evaluated as the product of the viscoelastic parameter K_m and the volume fraction of smooth muscle SMvolfrac
    // Gamma = 0.1{dimensionless}*K_m;
    Gamma = SMvolfrac_art*K_m;
    K_tube = E*h/((1{dimensionless}-sqr(nu))*r_0);
    K_tube_visco = 2{dimensionless}/3{dimensionless}*Gamma*h/(l*pi*pow(r_0, 3{dimensionless}));
  enddef;

  def comp K_tube_splenic_II_module as
    var t: second {interface: public};
    var l: metre {interface: public};
    var r_0: metre {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
    var Gamma: Js_per_m3 {interface: public};
    var SMvolfrac_art: dimensionless {interface: public};
    var nu: dimensionless {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var h: metre {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    // Gamma is the wall viscosity
    // evaluated as the product of the viscoelastic parameter K_m and the volume fraction of smooth muscle SMvolfrac
    // Gamma = 0.1{dimensionless}*K_m;
    Gamma = SMvolfrac_art*K_m;
    K_tube = E*h/((1{dimensionless}-sqr(nu))*r_0);
    K_tube_visco = 2{dimensionless}/3{dimensionless}*Gamma*h/(l*pi*pow(r_0, 3{dimensionless}));
  enddef;

  def comp K_tube_superior_mesenteric_module as
    var t: second {interface: public};
    var l: metre {interface: public};
    var r_0: metre {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
    var Gamma: Js_per_m3 {interface: public};
    var SMvolfrac_art: dimensionless {interface: public};
    var nu: dimensionless {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var h: metre {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    // Gamma is the wall viscosity
    // evaluated as the product of the viscoelastic parameter K_m and the volume fraction of smooth muscle SMvolfrac
    // Gamma = 0.1{dimensionless}*K_m;
    Gamma = SMvolfrac_art*K_m;
    K_tube = E*h/((1{dimensionless}-sqr(nu))*r_0);
    K_tube_visco = 2{dimensionless}/3{dimensionless}*Gamma*h/(l*pi*pow(r_0, 3{dimensionless}));
  enddef;

  def comp K_tube_abdominal_aorta_II_module as
    var t: second {interface: public};
    var l: metre {interface: public};
    var r_0: metre {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
    var Gamma: Js_per_m3 {interface: public};
    var SMvolfrac_art: dimensionless {interface: public};
    var nu: dimensionless {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var h: metre {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    // Gamma is the wall viscosity
    // evaluated as the product of the viscoelastic parameter K_m and the volume fraction of smooth muscle SMvolfrac
    // Gamma = 0.1{dimensionless}*K_m;
    Gamma = SMvolfrac_art*K_m;
    K_tube = E*h/((1{dimensionless}-sqr(nu))*r_0);
    K_tube_visco = 2{dimensionless}/3{dimensionless}*Gamma*h/(l*pi*pow(r_0, 3{dimensionless}));
  enddef;

  def comp K_tube_renal_L_module as
    var t: second {interface: public};
    var l: metre {interface: public};
    var r_0: metre {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
    var Gamma: Js_per_m3 {interface: public};
    var SMvolfrac_art: dimensionless {interface: public};
    var nu: dimensionless {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var h: metre {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    // Gamma is the wall viscosity
    // evaluated as the product of the viscoelastic parameter K_m and the volume fraction of smooth muscle SMvolfrac
    // Gamma = 0.1{dimensionless}*K_m;
    Gamma = SMvolfrac_art*K_m;
    K_tube = E*h/((1{dimensionless}-sqr(nu))*r_0);
    K_tube_visco = 2{dimensionless}/3{dimensionless}*Gamma*h/(l*pi*pow(r_0, 3{dimensionless}));
  enddef;

  def comp K_tube_abdominal_aorta_III_module as
    var t: second {interface: public};
    var l: metre {interface: public};
    var r_0: metre {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
    var Gamma: Js_per_m3 {interface: public};
    var SMvolfrac_art: dimensionless {interface: public};
    var nu: dimensionless {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var h: metre {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    // Gamma is the wall viscosity
    // evaluated as the product of the viscoelastic parameter K_m and the volume fraction of smooth muscle SMvolfrac
    // Gamma = 0.1{dimensionless}*K_m;
    Gamma = SMvolfrac_art*K_m;
    K_tube = E*h/((1{dimensionless}-sqr(nu))*r_0);
    K_tube_visco = 2{dimensionless}/3{dimensionless}*Gamma*h/(l*pi*pow(r_0, 3{dimensionless}));
  enddef;

  def comp K_tube_renal_R_module as
    var t: second {interface: public};
    var l: metre {interface: public};
    var r_0: metre {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
    var Gamma: Js_per_m3 {interface: public};
    var SMvolfrac_art: dimensionless {interface: public};
    var nu: dimensionless {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var h: metre {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    // Gamma is the wall viscosity
    // evaluated as the product of the viscoelastic parameter K_m and the volume fraction of smooth muscle SMvolfrac
    // Gamma = 0.1{dimensionless}*K_m;
    Gamma = SMvolfrac_art*K_m;
    K_tube = E*h/((1{dimensionless}-sqr(nu))*r_0);
    K_tube_visco = 2{dimensionless}/3{dimensionless}*Gamma*h/(l*pi*pow(r_0, 3{dimensionless}));
  enddef;

  def comp K_tube_abdominal_aorta_IV_module as
    var t: second {interface: public};
    var l: metre {interface: public};
    var r_0: metre {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
    var Gamma: Js_per_m3 {interface: public};
    var SMvolfrac_art: dimensionless {interface: public};
    var nu: dimensionless {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var h: metre {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    // Gamma is the wall viscosity
    // evaluated as the product of the viscoelastic parameter K_m and the volume fraction of smooth muscle SMvolfrac
    // Gamma = 0.1{dimensionless}*K_m;
    Gamma = SMvolfrac_art*K_m;
    K_tube = E*h/((1{dimensionless}-sqr(nu))*r_0);
    K_tube_visco = 2{dimensionless}/3{dimensionless}*Gamma*h/(l*pi*pow(r_0, 3{dimensionless}));
  enddef;

  def comp K_tube_inferior_mesenteric_module as
    var t: second {interface: public};
    var l: metre {interface: public};
    var r_0: metre {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
    var Gamma: Js_per_m3 {interface: public};
    var SMvolfrac_art: dimensionless {interface: public};
    var nu: dimensionless {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var h: metre {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    // Gamma is the wall viscosity
    // evaluated as the product of the viscoelastic parameter K_m and the volume fraction of smooth muscle SMvolfrac
    // Gamma = 0.1{dimensionless}*K_m;
    Gamma = SMvolfrac_art*K_m;
    K_tube = E*h/((1{dimensionless}-sqr(nu))*r_0);
    K_tube_visco = 2{dimensionless}/3{dimensionless}*Gamma*h/(l*pi*pow(r_0, 3{dimensionless}));
  enddef;

  def comp K_tube_abdominal_aorta_V_module as
    var t: second {interface: public};
    var l: metre {interface: public};
    var r_0: metre {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
    var Gamma: Js_per_m3 {interface: public};
    var SMvolfrac_art: dimensionless {interface: public};
    var nu: dimensionless {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var h: metre {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    // Gamma is the wall viscosity
    // evaluated as the product of the viscoelastic parameter K_m and the volume fraction of smooth muscle SMvolfrac
    // Gamma = 0.1{dimensionless}*K_m;
    Gamma = SMvolfrac_art*K_m;
    K_tube = E*h/((1{dimensionless}-sqr(nu))*r_0);
    K_tube_visco = 2{dimensionless}/3{dimensionless}*Gamma*h/(l*pi*pow(r_0, 3{dimensionless}));
  enddef;

  def comp K_tube_common_iliac_R_module as
    var t: second {interface: public};
    var l: metre {interface: public};
    var r_0: metre {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
    var Gamma: Js_per_m3 {interface: public};
    var SMvolfrac_art: dimensionless {interface: public};
    var nu: dimensionless {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var h: metre {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    // Gamma is the wall viscosity
    // evaluated as the product of the viscoelastic parameter K_m and the volume fraction of smooth muscle SMvolfrac
    // Gamma = 0.1{dimensionless}*K_m;
    Gamma = SMvolfrac_art*K_m;
    K_tube = E*h/((1{dimensionless}-sqr(nu))*r_0);
    K_tube_visco = 2{dimensionless}/3{dimensionless}*Gamma*h/(l*pi*pow(r_0, 3{dimensionless}));
  enddef;

  def comp K_tube_common_iliac_L_module as
    var t: second {interface: public};
    var l: metre {interface: public};
    var r_0: metre {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
    var Gamma: Js_per_m3 {interface: public};
    var SMvolfrac_art: dimensionless {interface: public};
    var nu: dimensionless {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var h: metre {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    // Gamma is the wall viscosity
    // evaluated as the product of the viscoelastic parameter K_m and the volume fraction of smooth muscle SMvolfrac
    // Gamma = 0.1{dimensionless}*K_m;
    Gamma = SMvolfrac_art*K_m;
    K_tube = E*h/((1{dimensionless}-sqr(nu))*r_0);
    K_tube_visco = 2{dimensionless}/3{dimensionless}*Gamma*h/(l*pi*pow(r_0, 3{dimensionless}));
  enddef;

  def comp K_tube_external_iliac_R_module as
    var t: second {interface: public};
    var l: metre {interface: public};
    var r_0: metre {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
    var Gamma: Js_per_m3 {interface: public};
    var SMvolfrac_art: dimensionless {interface: public};
    var nu: dimensionless {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var h: metre {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    // Gamma is the wall viscosity
    // evaluated as the product of the viscoelastic parameter K_m and the volume fraction of smooth muscle SMvolfrac
    // Gamma = 0.1{dimensionless}*K_m;
    Gamma = SMvolfrac_art*K_m;
    K_tube = E*h/((1{dimensionless}-sqr(nu))*r_0);
    K_tube_visco = 2{dimensionless}/3{dimensionless}*Gamma*h/(l*pi*pow(r_0, 3{dimensionless}));
  enddef;

  def comp K_tube_internal_iliac_R_module as
    var t: second {interface: public};
    var l: metre {interface: public};
    var r_0: metre {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
    var Gamma: Js_per_m3 {interface: public};
    var SMvolfrac_art: dimensionless {interface: public};
    var nu: dimensionless {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var h: metre {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    // Gamma is the wall viscosity
    // evaluated as the product of the viscoelastic parameter K_m and the volume fraction of smooth muscle SMvolfrac
    // Gamma = 0.1{dimensionless}*K_m;
    Gamma = SMvolfrac_art*K_m;
    K_tube = E*h/((1{dimensionless}-sqr(nu))*r_0);
    K_tube_visco = 2{dimensionless}/3{dimensionless}*Gamma*h/(l*pi*pow(r_0, 3{dimensionless}));
  enddef;

  def comp K_tube_femoral_R_I_module as
    var t: second {interface: public};
    var l: metre {interface: public};
    var r_0: metre {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
    var Gamma: Js_per_m3 {interface: public};
    var SMvolfrac_art: dimensionless {interface: public};
    var nu: dimensionless {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var h: metre {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    // Gamma is the wall viscosity
    // evaluated as the product of the viscoelastic parameter K_m and the volume fraction of smooth muscle SMvolfrac
    // Gamma = 0.1{dimensionless}*K_m;
    Gamma = SMvolfrac_art*K_m;
    K_tube = E*h/((1{dimensionless}-sqr(nu))*r_0);
    K_tube_visco = 2{dimensionless}/3{dimensionless}*Gamma*h/(l*pi*pow(r_0, 3{dimensionless}));
  enddef;

  def comp K_tube_profunda_femoris_R_module as
    var t: second {interface: public};
    var l: metre {interface: public};
    var r_0: metre {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
    var Gamma: Js_per_m3 {interface: public};
    var SMvolfrac_art: dimensionless {interface: public};
    var nu: dimensionless {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var h: metre {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    // Gamma is the wall viscosity
    // evaluated as the product of the viscoelastic parameter K_m and the volume fraction of smooth muscle SMvolfrac
    // Gamma = 0.1{dimensionless}*K_m;
    Gamma = SMvolfrac_art*K_m;
    K_tube = E*h/((1{dimensionless}-sqr(nu))*r_0);
    K_tube_visco = 2{dimensionless}/3{dimensionless}*Gamma*h/(l*pi*pow(r_0, 3{dimensionless}));
  enddef;

  def comp K_tube_femoral_R_II_module as
    var t: second {interface: public};
    var l: metre {interface: public};
    var r_0: metre {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
    var Gamma: Js_per_m3 {interface: public};
    var SMvolfrac_art: dimensionless {interface: public};
    var nu: dimensionless {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var h: metre {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    // Gamma is the wall viscosity
    // evaluated as the product of the viscoelastic parameter K_m and the volume fraction of smooth muscle SMvolfrac
    // Gamma = 0.1{dimensionless}*K_m;
    Gamma = SMvolfrac_art*K_m;
    K_tube = E*h/((1{dimensionless}-sqr(nu))*r_0);
    K_tube_visco = 2{dimensionless}/3{dimensionless}*Gamma*h/(l*pi*pow(r_0, 3{dimensionless}));
  enddef;

  def comp K_tube_popliteal_R_I_module as
    var t: second {interface: public};
    var l: metre {interface: public};
    var r_0: metre {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
    var Gamma: Js_per_m3 {interface: public};
    var SMvolfrac_art: dimensionless {interface: public};
    var nu: dimensionless {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var h: metre {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    // Gamma is the wall viscosity
    // evaluated as the product of the viscoelastic parameter K_m and the volume fraction of smooth muscle SMvolfrac
    // Gamma = 0.1{dimensionless}*K_m;
    Gamma = SMvolfrac_art*K_m;
    K_tube = E*h/((1{dimensionless}-sqr(nu))*r_0);
    K_tube_visco = 2{dimensionless}/3{dimensionless}*Gamma*h/(l*pi*pow(r_0, 3{dimensionless}));
  enddef;

  def comp K_tube_anterior_tibial_R_module as
    var t: second {interface: public};
    var l: metre {interface: public};
    var r_0: metre {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
    var Gamma: Js_per_m3 {interface: public};
    var SMvolfrac_art: dimensionless {interface: public};
    var nu: dimensionless {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var h: metre {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    // Gamma is the wall viscosity
    // evaluated as the product of the viscoelastic parameter K_m and the volume fraction of smooth muscle SMvolfrac
    // Gamma = 0.1{dimensionless}*K_m;
    Gamma = SMvolfrac_art*K_m;
    K_tube = E*h/((1{dimensionless}-sqr(nu))*r_0);
    K_tube_visco = 2{dimensionless}/3{dimensionless}*Gamma*h/(l*pi*pow(r_0, 3{dimensionless}));
  enddef;

  def comp K_tube_popliteal_R_II_module as
    var t: second {interface: public};
    var l: metre {interface: public};
    var r_0: metre {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
    var Gamma: Js_per_m3 {interface: public};
    var SMvolfrac_art: dimensionless {interface: public};
    var nu: dimensionless {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var h: metre {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    // Gamma is the wall viscosity
    // evaluated as the product of the viscoelastic parameter K_m and the volume fraction of smooth muscle SMvolfrac
    // Gamma = 0.1{dimensionless}*K_m;
    Gamma = SMvolfrac_art*K_m;
    K_tube = E*h/((1{dimensionless}-sqr(nu))*r_0);
    K_tube_visco = 2{dimensionless}/3{dimensionless}*Gamma*h/(l*pi*pow(r_0, 3{dimensionless}));
  enddef;

  def comp K_tube_tibiofibular_trunk_R_module as
    var t: second {interface: public};
    var l: metre {interface: public};
    var r_0: metre {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
    var Gamma: Js_per_m3 {interface: public};
    var SMvolfrac_art: dimensionless {interface: public};
    var nu: dimensionless {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var h: metre {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    // Gamma is the wall viscosity
    // evaluated as the product of the viscoelastic parameter K_m and the volume fraction of smooth muscle SMvolfrac
    // Gamma = 0.1{dimensionless}*K_m;
    Gamma = SMvolfrac_art*K_m;
    K_tube = E*h/((1{dimensionless}-sqr(nu))*r_0);
    K_tube_visco = 2{dimensionless}/3{dimensionless}*Gamma*h/(l*pi*pow(r_0, 3{dimensionless}));
  enddef;

  def comp K_tube_posterior_tibial_R_module as
    var t: second {interface: public};
    var l: metre {interface: public};
    var r_0: metre {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
    var Gamma: Js_per_m3 {interface: public};
    var SMvolfrac_art: dimensionless {interface: public};
    var nu: dimensionless {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var h: metre {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    // Gamma is the wall viscosity
    // evaluated as the product of the viscoelastic parameter K_m and the volume fraction of smooth muscle SMvolfrac
    // Gamma = 0.1{dimensionless}*K_m;
    Gamma = SMvolfrac_art*K_m;
    K_tube = E*h/((1{dimensionless}-sqr(nu))*r_0);
    K_tube_visco = 2{dimensionless}/3{dimensionless}*Gamma*h/(l*pi*pow(r_0, 3{dimensionless}));
  enddef;

  def comp K_tube_external_iliac_L_module as
    var t: second {interface: public};
    var l: metre {interface: public};
    var r_0: metre {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
    var Gamma: Js_per_m3 {interface: public};
    var SMvolfrac_art: dimensionless {interface: public};
    var nu: dimensionless {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var h: metre {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    // Gamma is the wall viscosity
    // evaluated as the product of the viscoelastic parameter K_m and the volume fraction of smooth muscle SMvolfrac
    // Gamma = 0.1{dimensionless}*K_m;
    Gamma = SMvolfrac_art*K_m;
    K_tube = E*h/((1{dimensionless}-sqr(nu))*r_0);
    K_tube_visco = 2{dimensionless}/3{dimensionless}*Gamma*h/(l*pi*pow(r_0, 3{dimensionless}));
  enddef;

  def comp K_tube_internal_iliac_L_module as
    var t: second {interface: public};
    var l: metre {interface: public};
    var r_0: metre {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
    var Gamma: Js_per_m3 {interface: public};
    var SMvolfrac_art: dimensionless {interface: public};
    var nu: dimensionless {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var h: metre {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    // Gamma is the wall viscosity
    // evaluated as the product of the viscoelastic parameter K_m and the volume fraction of smooth muscle SMvolfrac
    // Gamma = 0.1{dimensionless}*K_m;
    Gamma = SMvolfrac_art*K_m;
    K_tube = E*h/((1{dimensionless}-sqr(nu))*r_0);
    K_tube_visco = 2{dimensionless}/3{dimensionless}*Gamma*h/(l*pi*pow(r_0, 3{dimensionless}));
  enddef;

  def comp K_tube_femoral_L_I_module as
    var t: second {interface: public};
    var l: metre {interface: public};
    var r_0: metre {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
    var Gamma: Js_per_m3 {interface: public};
    var SMvolfrac_art: dimensionless {interface: public};
    var nu: dimensionless {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var h: metre {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    // Gamma is the wall viscosity
    // evaluated as the product of the viscoelastic parameter K_m and the volume fraction of smooth muscle SMvolfrac
    // Gamma = 0.1{dimensionless}*K_m;
    Gamma = SMvolfrac_art*K_m;
    K_tube = E*h/((1{dimensionless}-sqr(nu))*r_0);
    K_tube_visco = 2{dimensionless}/3{dimensionless}*Gamma*h/(l*pi*pow(r_0, 3{dimensionless}));
  enddef;

  def comp K_tube_profunda_femoris_L_module as
    var t: second {interface: public};
    var l: metre {interface: public};
    var r_0: metre {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
    var Gamma: Js_per_m3 {interface: public};
    var SMvolfrac_art: dimensionless {interface: public};
    var nu: dimensionless {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var h: metre {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    // Gamma is the wall viscosity
    // evaluated as the product of the viscoelastic parameter K_m and the volume fraction of smooth muscle SMvolfrac
    // Gamma = 0.1{dimensionless}*K_m;
    Gamma = SMvolfrac_art*K_m;
    K_tube = E*h/((1{dimensionless}-sqr(nu))*r_0);
    K_tube_visco = 2{dimensionless}/3{dimensionless}*Gamma*h/(l*pi*pow(r_0, 3{dimensionless}));
  enddef;

  def comp K_tube_femoral_L_II_module as
    var t: second {interface: public};
    var l: metre {interface: public};
    var r_0: metre {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
    var Gamma: Js_per_m3 {interface: public};
    var SMvolfrac_art: dimensionless {interface: public};
    var nu: dimensionless {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var h: metre {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    // Gamma is the wall viscosity
    // evaluated as the product of the viscoelastic parameter K_m and the volume fraction of smooth muscle SMvolfrac
    // Gamma = 0.1{dimensionless}*K_m;
    Gamma = SMvolfrac_art*K_m;
    K_tube = E*h/((1{dimensionless}-sqr(nu))*r_0);
    K_tube_visco = 2{dimensionless}/3{dimensionless}*Gamma*h/(l*pi*pow(r_0, 3{dimensionless}));
  enddef;

  def comp K_tube_popliteal_L_I_module as
    var t: second {interface: public};
    var l: metre {interface: public};
    var r_0: metre {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
    var Gamma: Js_per_m3 {interface: public};
    var SMvolfrac_art: dimensionless {interface: public};
    var nu: dimensionless {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var h: metre {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    // Gamma is the wall viscosity
    // evaluated as the product of the viscoelastic parameter K_m and the volume fraction of smooth muscle SMvolfrac
    // Gamma = 0.1{dimensionless}*K_m;
    Gamma = SMvolfrac_art*K_m;
    K_tube = E*h/((1{dimensionless}-sqr(nu))*r_0);
    K_tube_visco = 2{dimensionless}/3{dimensionless}*Gamma*h/(l*pi*pow(r_0, 3{dimensionless}));
  enddef;

  def comp K_tube_anterior_tibial_L_module as
    var t: second {interface: public};
    var l: metre {interface: public};
    var r_0: metre {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
    var Gamma: Js_per_m3 {interface: public};
    var SMvolfrac_art: dimensionless {interface: public};
    var nu: dimensionless {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var h: metre {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    // Gamma is the wall viscosity
    // evaluated as the product of the viscoelastic parameter K_m and the volume fraction of smooth muscle SMvolfrac
    // Gamma = 0.1{dimensionless}*K_m;
    Gamma = SMvolfrac_art*K_m;
    K_tube = E*h/((1{dimensionless}-sqr(nu))*r_0);
    K_tube_visco = 2{dimensionless}/3{dimensionless}*Gamma*h/(l*pi*pow(r_0, 3{dimensionless}));
  enddef;

  def comp K_tube_popliteal_L_II_module as
    var t: second {interface: public};
    var l: metre {interface: public};
    var r_0: metre {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
    var Gamma: Js_per_m3 {interface: public};
    var SMvolfrac_art: dimensionless {interface: public};
    var nu: dimensionless {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var h: metre {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    // Gamma is the wall viscosity
    // evaluated as the product of the viscoelastic parameter K_m and the volume fraction of smooth muscle SMvolfrac
    // Gamma = 0.1{dimensionless}*K_m;
    Gamma = SMvolfrac_art*K_m;
    K_tube = E*h/((1{dimensionless}-sqr(nu))*r_0);
    K_tube_visco = 2{dimensionless}/3{dimensionless}*Gamma*h/(l*pi*pow(r_0, 3{dimensionless}));
  enddef;

  def comp K_tube_tibiofibular_trunk_L_module as
    var t: second {interface: public};
    var l: metre {interface: public};
    var r_0: metre {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
    var Gamma: Js_per_m3 {interface: public};
    var SMvolfrac_art: dimensionless {interface: public};
    var nu: dimensionless {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var h: metre {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    // Gamma is the wall viscosity
    // evaluated as the product of the viscoelastic parameter K_m and the volume fraction of smooth muscle SMvolfrac
    // Gamma = 0.1{dimensionless}*K_m;
    Gamma = SMvolfrac_art*K_m;
    K_tube = E*h/((1{dimensionless}-sqr(nu))*r_0);
    K_tube_visco = 2{dimensionless}/3{dimensionless}*Gamma*h/(l*pi*pow(r_0, 3{dimensionless}));
  enddef;

  def comp K_tube_posterior_tibial_L_module as
    var t: second {interface: public};
    var l: metre {interface: public};
    var r_0: metre {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
    var Gamma: Js_per_m3 {interface: public};
    var SMvolfrac_art: dimensionless {interface: public};
    var nu: dimensionless {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var h: metre {interface: public};
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    // Gamma is the wall viscosity
    // evaluated as the product of the viscoelastic parameter K_m and the volume fraction of smooth muscle SMvolfrac
    // Gamma = 0.1{dimensionless}*K_m;
    Gamma = SMvolfrac_art*K_m;
    K_tube = E*h/((1{dimensionless}-sqr(nu))*r_0);
    K_tube_visco = 2{dimensionless}/3{dimensionless}*Gamma*h/(l*pi*pow(r_0, 3{dimensionless}));
  enddef;

  def comp terminal_venous_connection as
    var v_external_carotid_R_T: m3_per_s {interface: public};
    var v_internal_carotid_R_T: m3_per_s {interface: public};
    var v_vertebral_R_T: m3_per_s {interface: public};
    var v_radial_R_T: m3_per_s {interface: public};
    var v_posterior_interosseous_R_T: m3_per_s {interface: public};
    var v_ulnar_R_II_T: m3_per_s {interface: public};
    var v_external_carotid_L_T: m3_per_s {interface: public};
    var v_internal_carotid_L_T: m3_per_s {interface: public};
    var v_vertebral_L_T: m3_per_s {interface: public};
    var v_radial_L_T: m3_per_s {interface: public};
    var v_posterior_interosseous_L_T: m3_per_s {interface: public};
    var v_ulnar_L_II_T: m3_per_s {interface: public};
    var v_posterior_intercostal_T6_R_T: m3_per_s {interface: public};
    var v_posterior_intercostal_T6_L_T: m3_per_s {interface: public};
    var v_posterior_intercostal_T7_R_T: m3_per_s {interface: public};
    var v_posterior_intercostal_T7_L_T: m3_per_s {interface: public};
    var v_common_hepatic_T: m3_per_s {interface: public};
    var v_left_gastric_T: m3_per_s {interface: public};
    var v_splenic_II_T: m3_per_s {interface: public};
    var v_superior_mesenteric_T: m3_per_s {interface: public};
    var v_renal_L_T: m3_per_s {interface: public};
    var v_renal_R_T: m3_per_s {interface: public};
    var v_inferior_mesenteric_T: m3_per_s {interface: public};
    var v_internal_iliac_R_T: m3_per_s {interface: public};
    var v_profunda_femoris_R_T: m3_per_s {interface: public};
    var v_anterior_tibial_R_T: m3_per_s {interface: public};
    var v_posterior_tibial_R_T: m3_per_s {interface: public};
    var v_internal_iliac_L_T: m3_per_s {interface: public};
    var v_profunda_femoris_L_T: m3_per_s {interface: public};
    var v_anterior_tibial_L_T: m3_per_s {interface: public};
    var v_posterior_tibial_L_T: m3_per_s {interface: public};
  enddef;

  def comp generic_junction_connection as
    var v_brachiocephalic_trunk_Nout: m3_per_s {interface: public};
    var v_aortic_arch_II_Nout: m3_per_s {interface: public};
    var v_aortic_arch_I_sum_Nout: m3_per_s {interface: public};
    var v_subclavian_R_I_Nout: m3_per_s {interface: public};
    var v_common_carotid_R_Nout: m3_per_s {interface: public};
    var v_brachiocephalic_trunk_sum_Nout: m3_per_s {interface: public};
    var v_common_carotid_L_Nout: m3_per_s {interface: public};
    var v_aortic_arch_III_Nout: m3_per_s {interface: public};
    var v_aortic_arch_II_sum_Nout: m3_per_s {interface: public};
    var v_vertebral_R_Nout: m3_per_s {interface: public};
    var v_subclavian_R_II_Nout: m3_per_s {interface: public};
    var v_subclavian_R_I_sum_Nout: m3_per_s {interface: public};
    var v_external_carotid_R_Nout: m3_per_s {interface: public};
    var v_internal_carotid_R_Nout: m3_per_s {interface: public};
    var v_common_carotid_R_sum_Nout: m3_per_s {interface: public};
    var v_radial_R_Nout: m3_per_s {interface: public};
    var v_ulnar_R_I_Nout: m3_per_s {interface: public};
    var v_brachial_R_sum_Nout: m3_per_s {interface: public};
    var v_common_interosseous_R_Nout: m3_per_s {interface: public};
    var v_ulnar_R_II_Nout: m3_per_s {interface: public};
    var v_ulnar_R_I_sum_Nout: m3_per_s {interface: public};
    var v_external_carotid_L_Nout: m3_per_s {interface: public};
    var v_internal_carotid_L_Nout: m3_per_s {interface: public};
    var v_common_carotid_L_sum_Nout: m3_per_s {interface: public};
    var v_subclavian_L_I_Nout: m3_per_s {interface: public};
    var v_aortic_arch_IV_Nout: m3_per_s {interface: public};
    var v_aortic_arch_III_sum_Nout: m3_per_s {interface: public};
    var v_vertebral_L_Nout: m3_per_s {interface: public};
    var v_subclavian_L_II_Nout: m3_per_s {interface: public};
    var v_subclavian_L_I_sum_Nout: m3_per_s {interface: public};
    var v_radial_L_Nout: m3_per_s {interface: public};
    var v_ulnar_L_I_Nout: m3_per_s {interface: public};
    var v_brachial_L_sum_Nout: m3_per_s {interface: public};
    var v_common_interosseous_L_Nout: m3_per_s {interface: public};
    var v_ulnar_L_II_Nout: m3_per_s {interface: public};
    var v_ulnar_L_I_sum_Nout: m3_per_s {interface: public};
    var v_posterior_intercostal_T6_R_Nout: m3_per_s {interface: public};
    var v_thoracic_aorta_II_Nout: m3_per_s {interface: public};
    var v_thoracic_aorta_I_sum_Nout: m3_per_s {interface: public};
    var v_posterior_intercostal_T6_L_Nout: m3_per_s {interface: public};
    var v_thoracic_aorta_III_Nout: m3_per_s {interface: public};
    var v_thoracic_aorta_II_sum_Nout: m3_per_s {interface: public};
    var v_posterior_intercostal_T7_R_Nout: m3_per_s {interface: public};
    var v_thoracic_aorta_IV_Nout: m3_per_s {interface: public};
    var v_thoracic_aorta_III_sum_Nout: m3_per_s {interface: public};
    var v_posterior_intercostal_T7_L_Nout: m3_per_s {interface: public};
    var v_thoracic_aorta_V_Nout: m3_per_s {interface: public};
    var v_thoracic_aorta_IV_sum_Nout: m3_per_s {interface: public};
    var v_celiac_trunk_Nout: m3_per_s {interface: public};
    var v_abdominal_aorta_I_Nout: m3_per_s {interface: public};
    var v_thoracic_aorta_VI_sum_Nout: m3_per_s {interface: public};
    var v_common_hepatic_Nout: m3_per_s {interface: public};
    var v_splenic_I_Nout: m3_per_s {interface: public};
    var v_celiac_trunk_sum_Nout: m3_per_s {interface: public};
    var v_superior_mesenteric_Nout: m3_per_s {interface: public};
    var v_abdominal_aorta_II_Nout: m3_per_s {interface: public};
    var v_abdominal_aorta_I_sum_Nout: m3_per_s {interface: public};
    var v_left_gastric_Nout: m3_per_s {interface: public};
    var v_splenic_II_Nout: m3_per_s {interface: public};
    var v_splenic_I_sum_Nout: m3_per_s {interface: public};
    var v_renal_L_Nout: m3_per_s {interface: public};
    var v_abdominal_aorta_III_Nout: m3_per_s {interface: public};
    var v_abdominal_aorta_II_sum_Nout: m3_per_s {interface: public};
    var v_renal_R_Nout: m3_per_s {interface: public};
    var v_abdominal_aorta_IV_Nout: m3_per_s {interface: public};
    var v_abdominal_aorta_III_sum_Nout: m3_per_s {interface: public};
    var v_inferior_mesenteric_Nout: m3_per_s {interface: public};
    var v_abdominal_aorta_V_Nout: m3_per_s {interface: public};
    var v_abdominal_aorta_IV_sum_Nout: m3_per_s {interface: public};
    var v_common_iliac_R_Nout: m3_per_s {interface: public};
    var v_common_iliac_L_Nout: m3_per_s {interface: public};
    var v_abdominal_aorta_V_sum_Nout: m3_per_s {interface: public};
    var v_external_iliac_R_Nout: m3_per_s {interface: public};
    var v_internal_iliac_R_Nout: m3_per_s {interface: public};
    var v_common_iliac_R_sum_Nout: m3_per_s {interface: public};
    var v_external_iliac_L_Nout: m3_per_s {interface: public};
    var v_internal_iliac_L_Nout: m3_per_s {interface: public};
    var v_common_iliac_L_sum_Nout: m3_per_s {interface: public};
    var v_profunda_femoris_R_Nout: m3_per_s {interface: public};
    var v_femoral_R_II_Nout: m3_per_s {interface: public};
    var v_femoral_R_I_sum_Nout: m3_per_s {interface: public};
    var v_anterior_tibial_R_Nout: m3_per_s {interface: public};
    var v_popliteal_R_II_Nout: m3_per_s {interface: public};
    var v_popliteal_R_I_sum_Nout: m3_per_s {interface: public};
    var v_profunda_femoris_L_Nout: m3_per_s {interface: public};
    var v_femoral_L_II_Nout: m3_per_s {interface: public};
    var v_femoral_L_I_sum_Nout: m3_per_s {interface: public};
    var v_anterior_tibial_L_Nout: m3_per_s {interface: public};
    var v_popliteal_L_II_Nout: m3_per_s {interface: public};
    var v_popliteal_L_I_sum_Nout: m3_per_s {interface: public};
    v_aortic_arch_I_sum_Nout = v_brachiocephalic_trunk_Nout+v_aortic_arch_II_Nout;
    v_brachiocephalic_trunk_sum_Nout = v_subclavian_R_I_Nout+v_common_carotid_R_Nout;
    v_aortic_arch_II_sum_Nout = v_common_carotid_L_Nout+v_aortic_arch_III_Nout;
    v_subclavian_R_I_sum_Nout = v_vertebral_R_Nout+v_subclavian_R_II_Nout;
    v_common_carotid_R_sum_Nout = v_external_carotid_R_Nout+v_internal_carotid_R_Nout;
    v_brachial_R_sum_Nout = v_radial_R_Nout+v_ulnar_R_I_Nout;
    v_ulnar_R_I_sum_Nout = v_common_interosseous_R_Nout+v_ulnar_R_II_Nout;
    v_common_carotid_L_sum_Nout = v_external_carotid_L_Nout+v_internal_carotid_L_Nout;
    v_aortic_arch_III_sum_Nout = v_subclavian_L_I_Nout+v_aortic_arch_IV_Nout;
    v_subclavian_L_I_sum_Nout = v_vertebral_L_Nout+v_subclavian_L_II_Nout;
    v_brachial_L_sum_Nout = v_radial_L_Nout+v_ulnar_L_I_Nout;
    v_ulnar_L_I_sum_Nout = v_common_interosseous_L_Nout+v_ulnar_L_II_Nout;
    v_thoracic_aorta_I_sum_Nout = v_posterior_intercostal_T6_R_Nout+v_thoracic_aorta_II_Nout;
    v_thoracic_aorta_II_sum_Nout = v_posterior_intercostal_T6_L_Nout+v_thoracic_aorta_III_Nout;
    v_thoracic_aorta_III_sum_Nout = v_posterior_intercostal_T7_R_Nout+v_thoracic_aorta_IV_Nout;
    v_thoracic_aorta_IV_sum_Nout = v_posterior_intercostal_T7_L_Nout+v_thoracic_aorta_V_Nout;
    v_thoracic_aorta_VI_sum_Nout = v_celiac_trunk_Nout+v_abdominal_aorta_I_Nout;
    v_celiac_trunk_sum_Nout = v_common_hepatic_Nout+v_splenic_I_Nout;
    v_abdominal_aorta_I_sum_Nout = v_superior_mesenteric_Nout+v_abdominal_aorta_II_Nout;
    v_splenic_I_sum_Nout = v_left_gastric_Nout+v_splenic_II_Nout;
    v_abdominal_aorta_II_sum_Nout = v_renal_L_Nout+v_abdominal_aorta_III_Nout;
    v_abdominal_aorta_III_sum_Nout = v_renal_R_Nout+v_abdominal_aorta_IV_Nout;
    v_abdominal_aorta_IV_sum_Nout = v_inferior_mesenteric_Nout+v_abdominal_aorta_V_Nout;
    v_abdominal_aorta_V_sum_Nout = v_common_iliac_R_Nout+v_common_iliac_L_Nout;
    v_common_iliac_R_sum_Nout = v_external_iliac_R_Nout+v_internal_iliac_R_Nout;
    v_common_iliac_L_sum_Nout = v_external_iliac_L_Nout+v_internal_iliac_L_Nout;
    v_femoral_R_I_sum_Nout = v_profunda_femoris_R_Nout+v_femoral_R_II_Nout;
    v_popliteal_R_I_sum_Nout = v_anterior_tibial_R_Nout+v_popliteal_R_II_Nout;
    v_femoral_L_I_sum_Nout = v_profunda_femoris_L_Nout+v_femoral_L_II_Nout;
    v_popliteal_L_I_sum_Nout = v_anterior_tibial_L_Nout+v_popliteal_L_II_Nout;
  enddef;

  def comp input_flow_aorticroot as
    var v: m3_per_s {interface: public};
    var T: second {interface: public};
  enddef;

  def comp aortic_arch_I as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u_d: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_0: J_per_m3 {interface: public};
    var q_C: m3 {interface: public};
    var q_C_d: m3 {interface: public};
    var q_0_2: m3 {interface: public};
    var q_p: m3 {interface: public};
    var q_d: m3 {interface: public};
    var q: m3 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
  enddef;

  def comp brachiocephalic_trunk as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_0: J_per_m3 {interface: public};
    var du_dt: J_per_m3s {interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
  enddef;

  def comp aortic_arch_II as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_0: J_per_m3 {interface: public};
    var du_dt: J_per_m3s {interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
  enddef;

  def comp subclavian_R_I as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_0: J_per_m3 {interface: public};
    var du_dt: J_per_m3s {interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
  enddef;

  def comp common_carotid_R as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_0: J_per_m3 {interface: public};
    var du_dt: J_per_m3s {interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
  enddef;

  def comp vertebral_R as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
  enddef;

  def comp subclavian_R_II as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
  enddef;

  def comp axillary_R as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
  enddef;

  def comp brachial_R as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_0: J_per_m3 {interface: public};
    var du_dt: J_per_m3s {interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
  enddef;

  def comp radial_R as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
  enddef;

  def comp ulnar_R_I as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_0: J_per_m3 {interface: public};
    var du_dt: J_per_m3s {interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
  enddef;

  def comp common_interosseous_R as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
  enddef;

  def comp ulnar_R_II as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
  enddef;

  def comp posterior_interosseous_R as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
  enddef;

  def comp external_carotid_R as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
  enddef;

  def comp internal_carotid_R as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
  enddef;

  def comp common_carotid_L as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_0: J_per_m3 {interface: public};
    var du_dt: J_per_m3s {interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
  enddef;

  def comp aortic_arch_III as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_0: J_per_m3 {interface: public};
    var du_dt: J_per_m3s {interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
  enddef;

  def comp external_carotid_L as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
  enddef;

  def comp internal_carotid_L as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
  enddef;

  def comp subclavian_L_I as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_0: J_per_m3 {interface: public};
    var du_dt: J_per_m3s {interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
  enddef;

  def comp aortic_arch_IV as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
  enddef;

  def comp vertebral_L as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
  enddef;

  def comp subclavian_L_II as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
  enddef;

  def comp axillary_L as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
  enddef;

  def comp brachial_L as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_0: J_per_m3 {interface: public};
    var du_dt: J_per_m3s {interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
  enddef;

  def comp radial_L as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
  enddef;

  def comp ulnar_L_I as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_0: J_per_m3 {interface: public};
    var du_dt: J_per_m3s {interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
  enddef;

  def comp common_interosseous_L as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
  enddef;

  def comp ulnar_L_II as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
  enddef;

  def comp posterior_interosseous_L as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
  enddef;

  def comp thoracic_aorta_I as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_0: J_per_m3 {interface: public};
    var du_dt: J_per_m3s {interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
  enddef;

  def comp posterior_intercostal_T6_R as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
  enddef;

  def comp thoracic_aorta_II as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_0: J_per_m3 {interface: public};
    var du_dt: J_per_m3s {interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
  enddef;

  def comp posterior_intercostal_T6_L as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
  enddef;

  def comp thoracic_aorta_III as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_0: J_per_m3 {interface: public};
    var du_dt: J_per_m3s {interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
  enddef;

  def comp posterior_intercostal_T7_R as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
  enddef;

  def comp thoracic_aorta_IV as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_0: J_per_m3 {interface: public};
    var du_dt: J_per_m3s {interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
  enddef;

  def comp posterior_intercostal_T7_L as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
  enddef;

  def comp thoracic_aorta_V as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
  enddef;

  def comp thoracic_aorta_VI as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_0: J_per_m3 {interface: public};
    var du_dt: J_per_m3s {interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
  enddef;

  def comp celiac_trunk as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_0: J_per_m3 {interface: public};
    var du_dt: J_per_m3s {interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
  enddef;

  def comp abdominal_aorta_I as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_0: J_per_m3 {interface: public};
    var du_dt: J_per_m3s {interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
  enddef;

  def comp common_hepatic as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
  enddef;

  def comp splenic_I as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_0: J_per_m3 {interface: public};
    var du_dt: J_per_m3s {interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
  enddef;

  def comp left_gastric as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
  enddef;

  def comp splenic_II as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
  enddef;

  def comp superior_mesenteric as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
  enddef;

  def comp abdominal_aorta_II as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_0: J_per_m3 {interface: public};
    var du_dt: J_per_m3s {interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
  enddef;

  def comp renal_L as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
  enddef;

  def comp abdominal_aorta_III as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_0: J_per_m3 {interface: public};
    var du_dt: J_per_m3s {interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
  enddef;

  def comp renal_R as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
  enddef;

  def comp abdominal_aorta_IV as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_0: J_per_m3 {interface: public};
    var du_dt: J_per_m3s {interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
  enddef;

  def comp inferior_mesenteric as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
  enddef;

  def comp abdominal_aorta_V as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_0: J_per_m3 {interface: public};
    var du_dt: J_per_m3s {interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
  enddef;

  def comp common_iliac_R as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_0: J_per_m3 {interface: public};
    var du_dt: J_per_m3s {interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
  enddef;

  def comp common_iliac_L as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_0: J_per_m3 {interface: public};
    var du_dt: J_per_m3s {interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
  enddef;

  def comp external_iliac_R as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
  enddef;

  def comp internal_iliac_R as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
  enddef;

  def comp femoral_R_I as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_0: J_per_m3 {interface: public};
    var du_dt: J_per_m3s {interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
  enddef;

  def comp profunda_femoris_R as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
  enddef;

  def comp femoral_R_II as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
  enddef;

  def comp popliteal_R_I as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_0: J_per_m3 {interface: public};
    var du_dt: J_per_m3s {interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
  enddef;

  def comp anterior_tibial_R as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
  enddef;

  def comp popliteal_R_II as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
  enddef;

  def comp tibiofibular_trunk_R as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
  enddef;

  def comp posterior_tibial_R as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
  enddef;

  def comp external_iliac_L as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
  enddef;

  def comp internal_iliac_L as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
  enddef;

  def comp femoral_L_I as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_0: J_per_m3 {interface: public};
    var du_dt: J_per_m3s {interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
  enddef;

  def comp profunda_femoris_L as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
  enddef;

  def comp femoral_L_II as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
  enddef;

  def comp popliteal_L_I as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_0: J_per_m3 {interface: public};
    var du_dt: J_per_m3s {interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
  enddef;

  def comp anterior_tibial_L as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
  enddef;

  def comp popliteal_L_II as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
  enddef;

  def comp tibiofibular_trunk_L as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
  enddef;

  def comp posterior_tibial_L as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var q_0: m3 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var r: metre {interface: public};
    var r_0: metre {interface: public};
    var u_0: J_per_m3 {interface: public};
    var m_tube: dimensionless {interface: public};
    var n_tube: dimensionless {interface: public};
    var R_flag: dimensionless {interface: public};
    var I_scale: dimensionless {interface: public};
  enddef;

  def comp external_carotid_R_T as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var v_T: m3_per_s {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_out: J_per_m3 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
  enddef;

  def comp internal_carotid_R_T as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var v_T: m3_per_s {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_out: J_per_m3 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
  enddef;

  def comp vertebral_R_T as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var v_T: m3_per_s {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_out: J_per_m3 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
  enddef;

  def comp radial_R_T as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var v_T: m3_per_s {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_out: J_per_m3 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
  enddef;

  def comp posterior_interosseous_R_T as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var v_T: m3_per_s {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_out: J_per_m3 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
  enddef;

  def comp ulnar_R_II_T as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var v_T: m3_per_s {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_out: J_per_m3 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
  enddef;

  def comp external_carotid_L_T as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var v_T: m3_per_s {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_out: J_per_m3 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
  enddef;

  def comp internal_carotid_L_T as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var v_T: m3_per_s {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_out: J_per_m3 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
  enddef;

  def comp vertebral_L_T as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var v_T: m3_per_s {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_out: J_per_m3 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
  enddef;

  def comp radial_L_T as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var v_T: m3_per_s {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_out: J_per_m3 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
  enddef;

  def comp posterior_interosseous_L_T as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var v_T: m3_per_s {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_out: J_per_m3 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
  enddef;

  def comp ulnar_L_II_T as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var v_T: m3_per_s {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_out: J_per_m3 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
  enddef;

  def comp posterior_intercostal_T6_R_T as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var v_T: m3_per_s {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_out: J_per_m3 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
  enddef;

  def comp posterior_intercostal_T6_L_T as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var v_T: m3_per_s {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_out: J_per_m3 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
  enddef;

  def comp posterior_intercostal_T7_R_T as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var v_T: m3_per_s {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_out: J_per_m3 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
  enddef;

  def comp posterior_intercostal_T7_L_T as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var v_T: m3_per_s {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_out: J_per_m3 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
  enddef;

  def comp common_hepatic_T as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var v_T: m3_per_s {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_out: J_per_m3 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
  enddef;

  def comp left_gastric_T as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var v_T: m3_per_s {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_out: J_per_m3 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
  enddef;

  def comp splenic_II_T as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var v_T: m3_per_s {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_out: J_per_m3 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
  enddef;

  def comp superior_mesenteric_T as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var v_T: m3_per_s {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_out: J_per_m3 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
  enddef;

  def comp renal_L_T as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var v_T: m3_per_s {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_out: J_per_m3 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
  enddef;

  def comp renal_R_T as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var v_T: m3_per_s {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_out: J_per_m3 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
  enddef;

  def comp inferior_mesenteric_T as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var v_T: m3_per_s {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_out: J_per_m3 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
  enddef;

  def comp internal_iliac_R_T as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var v_T: m3_per_s {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_out: J_per_m3 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
  enddef;

  def comp profunda_femoris_R_T as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var v_T: m3_per_s {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_out: J_per_m3 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
  enddef;

  def comp anterior_tibial_R_T as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var v_T: m3_per_s {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_out: J_per_m3 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
  enddef;

  def comp posterior_tibial_R_T as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var v_T: m3_per_s {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_out: J_per_m3 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
  enddef;

  def comp internal_iliac_L_T as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var v_T: m3_per_s {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_out: J_per_m3 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
  enddef;

  def comp profunda_femoris_L_T as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var v_T: m3_per_s {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_out: J_per_m3 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
  enddef;

  def comp anterior_tibial_L_T as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var v_T: m3_per_s {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_out: J_per_m3 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
  enddef;

  def comp posterior_tibial_L_T as
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var v_T: m3_per_s {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_out: J_per_m3 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var q_init: m3 {interface: public};
  enddef;

  def comp K_tube_aortic_arch_I as
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
  enddef;

  def comp K_tube_brachiocephalic_trunk as
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
  enddef;

  def comp K_tube_aortic_arch_II as
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
  enddef;

  def comp K_tube_subclavian_R_I as
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
  enddef;

  def comp K_tube_common_carotid_R as
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
  enddef;

  def comp K_tube_vertebral_R as
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
  enddef;

  def comp K_tube_subclavian_R_II as
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
  enddef;

  def comp K_tube_axillary_R as
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
  enddef;

  def comp K_tube_brachial_R as
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
  enddef;

  def comp K_tube_radial_R as
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
  enddef;

  def comp K_tube_ulnar_R_I as
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
  enddef;

  def comp K_tube_common_interosseous_R as
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
  enddef;

  def comp K_tube_ulnar_R_II as
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
  enddef;

  def comp K_tube_posterior_interosseous_R as
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
  enddef;

  def comp K_tube_external_carotid_R as
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
  enddef;

  def comp K_tube_internal_carotid_R as
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
  enddef;

  def comp K_tube_common_carotid_L as
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
  enddef;

  def comp K_tube_aortic_arch_III as
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
  enddef;

  def comp K_tube_external_carotid_L as
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
  enddef;

  def comp K_tube_internal_carotid_L as
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
  enddef;

  def comp K_tube_subclavian_L_I as
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
  enddef;

  def comp K_tube_aortic_arch_IV as
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
  enddef;

  def comp K_tube_vertebral_L as
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
  enddef;

  def comp K_tube_subclavian_L_II as
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
  enddef;

  def comp K_tube_axillary_L as
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
  enddef;

  def comp K_tube_brachial_L as
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
  enddef;

  def comp K_tube_radial_L as
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
  enddef;

  def comp K_tube_ulnar_L_I as
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
  enddef;

  def comp K_tube_common_interosseous_L as
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
  enddef;

  def comp K_tube_ulnar_L_II as
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
  enddef;

  def comp K_tube_posterior_interosseous_L as
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
  enddef;

  def comp K_tube_thoracic_aorta_I as
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
  enddef;

  def comp K_tube_posterior_intercostal_T6_R as
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
  enddef;

  def comp K_tube_thoracic_aorta_II as
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
  enddef;

  def comp K_tube_posterior_intercostal_T6_L as
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
  enddef;

  def comp K_tube_thoracic_aorta_III as
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
  enddef;

  def comp K_tube_posterior_intercostal_T7_R as
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
  enddef;

  def comp K_tube_thoracic_aorta_IV as
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
  enddef;

  def comp K_tube_posterior_intercostal_T7_L as
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
  enddef;

  def comp K_tube_thoracic_aorta_V as
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
  enddef;

  def comp K_tube_thoracic_aorta_VI as
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
  enddef;

  def comp K_tube_celiac_trunk as
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
  enddef;

  def comp K_tube_abdominal_aorta_I as
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
  enddef;

  def comp K_tube_common_hepatic as
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
  enddef;

  def comp K_tube_splenic_I as
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
  enddef;

  def comp K_tube_left_gastric as
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
  enddef;

  def comp K_tube_splenic_II as
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
  enddef;

  def comp K_tube_superior_mesenteric as
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
  enddef;

  def comp K_tube_abdominal_aorta_II as
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
  enddef;

  def comp K_tube_renal_L as
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
  enddef;

  def comp K_tube_abdominal_aorta_III as
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
  enddef;

  def comp K_tube_renal_R as
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
  enddef;

  def comp K_tube_abdominal_aorta_IV as
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
  enddef;

  def comp K_tube_inferior_mesenteric as
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
  enddef;

  def comp K_tube_abdominal_aorta_V as
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
  enddef;

  def comp K_tube_common_iliac_R as
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
  enddef;

  def comp K_tube_common_iliac_L as
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
  enddef;

  def comp K_tube_external_iliac_R as
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
  enddef;

  def comp K_tube_internal_iliac_R as
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
  enddef;

  def comp K_tube_femoral_R_I as
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
  enddef;

  def comp K_tube_profunda_femoris_R as
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
  enddef;

  def comp K_tube_femoral_R_II as
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
  enddef;

  def comp K_tube_popliteal_R_I as
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
  enddef;

  def comp K_tube_anterior_tibial_R as
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
  enddef;

  def comp K_tube_popliteal_R_II as
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
  enddef;

  def comp K_tube_tibiofibular_trunk_R as
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
  enddef;

  def comp K_tube_posterior_tibial_R as
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
  enddef;

  def comp K_tube_external_iliac_L as
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
  enddef;

  def comp K_tube_internal_iliac_L as
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
  enddef;

  def comp K_tube_femoral_L_I as
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
  enddef;

  def comp K_tube_profunda_femoris_L as
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
  enddef;

  def comp K_tube_femoral_L_II as
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
  enddef;

  def comp K_tube_popliteal_L_I as
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
  enddef;

  def comp K_tube_anterior_tibial_L as
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
  enddef;

  def comp K_tube_popliteal_L_II as
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
  enddef;

  def comp K_tube_tibiofibular_trunk_L as
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
  enddef;

  def comp K_tube_posterior_tibial_L as
    var K_tube: J_per_m3 {interface: public};
    var K_tube_visco: Js_per_m6 {interface: public};
    var E: J_per_m3 {interface: public};
    var K_m: Js_per_m3 {interface: public};
  enddef;

  def comp global as
    var T: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: Js2_per_m5 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var R_flag: dimensionless {interface: public};
    var nu: dimensionless {interface: public};
    var SMvolfrac_art: dimensionless {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
  enddef;
  def map between parameters and aortic_arch_I_module for
    vars u_0_aortic_arch_I and u_0;
    vars theta_aortic_arch_I and theta;
    vars l_aortic_arch_I and l;
    vars r_0_aortic_arch_I and r_0;
    vars m_tube_aortic_arch_I and m_tube;
    vars n_tube_aortic_arch_I and n_tube;
    vars I_scale_aortic_arch_I and I_scale;
    vars u_ext_aortic_arch_I and u_ext;
  enddef;
  def map between parameters and brachiocephalic_trunk_module for
    vars u_0_brachiocephalic_trunk and u_0;
    vars theta_brachiocephalic_trunk and theta;
    vars l_brachiocephalic_trunk and l;
    vars r_0_brachiocephalic_trunk and r_0;
    vars m_tube_brachiocephalic_trunk and m_tube;
    vars n_tube_brachiocephalic_trunk and n_tube;
    vars I_scale_brachiocephalic_trunk and I_scale;
    vars u_ext_brachiocephalic_trunk and u_ext;
  enddef;
  def map between parameters and aortic_arch_II_module for
    vars u_0_aortic_arch_II and u_0;
    vars theta_aortic_arch_II and theta;
    vars l_aortic_arch_II and l;
    vars r_0_aortic_arch_II and r_0;
    vars m_tube_aortic_arch_II and m_tube;
    vars n_tube_aortic_arch_II and n_tube;
    vars I_scale_aortic_arch_II and I_scale;
    vars u_ext_aortic_arch_II and u_ext;
  enddef;
  def map between parameters and subclavian_R_I_module for
    vars u_0_subclavian_R_I and u_0;
    vars theta_subclavian_R_I and theta;
    vars l_subclavian_R_I and l;
    vars r_0_subclavian_R_I and r_0;
    vars m_tube_subclavian_R_I and m_tube;
    vars n_tube_subclavian_R_I and n_tube;
    vars I_scale_subclavian_R_I and I_scale;
    vars u_ext_subclavian_R_I and u_ext;
  enddef;
  def map between parameters and common_carotid_R_module for
    vars u_0_common_carotid_R and u_0;
    vars theta_common_carotid_R and theta;
    vars l_common_carotid_R and l;
    vars r_0_common_carotid_R and r_0;
    vars m_tube_common_carotid_R and m_tube;
    vars n_tube_common_carotid_R and n_tube;
    vars I_scale_common_carotid_R and I_scale;
    vars u_ext_common_carotid_R and u_ext;
  enddef;
  def map between parameters and vertebral_R_module for
    vars theta_vertebral_R and theta;
    vars l_vertebral_R and l;
    vars r_0_vertebral_R and r_0;
    vars u_0_vertebral_R and u_0;
    vars m_tube_vertebral_R and m_tube;
    vars n_tube_vertebral_R and n_tube;
    vars I_scale_vertebral_R and I_scale;
    vars u_ext_vertebral_R and u_ext;
  enddef;
  def map between parameters and subclavian_R_II_module for
    vars theta_subclavian_R_II and theta;
    vars l_subclavian_R_II and l;
    vars r_0_subclavian_R_II and r_0;
    vars u_0_subclavian_R_II and u_0;
    vars m_tube_subclavian_R_II and m_tube;
    vars n_tube_subclavian_R_II and n_tube;
    vars I_scale_subclavian_R_II and I_scale;
    vars u_ext_subclavian_R_II and u_ext;
  enddef;
  def map between parameters and axillary_R_module for
    vars theta_axillary_R and theta;
    vars l_axillary_R and l;
    vars r_0_axillary_R and r_0;
    vars u_0_axillary_R and u_0;
    vars m_tube_axillary_R and m_tube;
    vars n_tube_axillary_R and n_tube;
    vars I_scale_axillary_R and I_scale;
    vars u_ext_axillary_R and u_ext;
  enddef;
  def map between parameters and brachial_R_module for
    vars u_0_brachial_R and u_0;
    vars theta_brachial_R and theta;
    vars l_brachial_R and l;
    vars r_0_brachial_R and r_0;
    vars m_tube_brachial_R and m_tube;
    vars n_tube_brachial_R and n_tube;
    vars I_scale_brachial_R and I_scale;
    vars u_ext_brachial_R and u_ext;
  enddef;
  def map between parameters and radial_R_module for
    vars theta_radial_R and theta;
    vars l_radial_R and l;
    vars r_0_radial_R and r_0;
    vars u_0_radial_R and u_0;
    vars m_tube_radial_R and m_tube;
    vars n_tube_radial_R and n_tube;
    vars I_scale_radial_R and I_scale;
    vars u_ext_radial_R and u_ext;
  enddef;
  def map between parameters and ulnar_R_I_module for
    vars u_0_ulnar_R_I and u_0;
    vars theta_ulnar_R_I and theta;
    vars l_ulnar_R_I and l;
    vars r_0_ulnar_R_I and r_0;
    vars m_tube_ulnar_R_I and m_tube;
    vars n_tube_ulnar_R_I and n_tube;
    vars I_scale_ulnar_R_I and I_scale;
    vars u_ext_ulnar_R_I and u_ext;
  enddef;
  def map between parameters and common_interosseous_R_module for
    vars theta_common_interosseous_R and theta;
    vars l_common_interosseous_R and l;
    vars r_0_common_interosseous_R and r_0;
    vars u_0_common_interosseous_R and u_0;
    vars m_tube_common_interosseous_R and m_tube;
    vars n_tube_common_interosseous_R and n_tube;
    vars I_scale_common_interosseous_R and I_scale;
    vars u_ext_common_interosseous_R and u_ext;
  enddef;
  def map between parameters and ulnar_R_II_module for
    vars theta_ulnar_R_II and theta;
    vars l_ulnar_R_II and l;
    vars r_0_ulnar_R_II and r_0;
    vars u_0_ulnar_R_II and u_0;
    vars m_tube_ulnar_R_II and m_tube;
    vars n_tube_ulnar_R_II and n_tube;
    vars I_scale_ulnar_R_II and I_scale;
    vars u_ext_ulnar_R_II and u_ext;
  enddef;
  def map between parameters and posterior_interosseous_R_module for
    vars theta_posterior_interosseous_R and theta;
    vars l_posterior_interosseous_R and l;
    vars r_0_posterior_interosseous_R and r_0;
    vars u_0_posterior_interosseous_R and u_0;
    vars m_tube_posterior_interosseous_R and m_tube;
    vars n_tube_posterior_interosseous_R and n_tube;
    vars I_scale_posterior_interosseous_R and I_scale;
    vars u_ext_posterior_interosseous_R and u_ext;
  enddef;
  def map between parameters and external_carotid_R_module for
    vars theta_external_carotid_R and theta;
    vars l_external_carotid_R and l;
    vars r_0_external_carotid_R and r_0;
    vars u_0_external_carotid_R and u_0;
    vars m_tube_external_carotid_R and m_tube;
    vars n_tube_external_carotid_R and n_tube;
    vars I_scale_external_carotid_R and I_scale;
    vars u_ext_external_carotid_R and u_ext;
  enddef;
  def map between parameters and internal_carotid_R_module for
    vars theta_internal_carotid_R and theta;
    vars l_internal_carotid_R and l;
    vars r_0_internal_carotid_R and r_0;
    vars u_0_internal_carotid_R and u_0;
    vars m_tube_internal_carotid_R and m_tube;
    vars n_tube_internal_carotid_R and n_tube;
    vars I_scale_internal_carotid_R and I_scale;
    vars u_ext_internal_carotid_R and u_ext;
  enddef;
  def map between parameters and common_carotid_L_module for
    vars u_0_common_carotid_L and u_0;
    vars theta_common_carotid_L and theta;
    vars l_common_carotid_L and l;
    vars r_0_common_carotid_L and r_0;
    vars m_tube_common_carotid_L and m_tube;
    vars n_tube_common_carotid_L and n_tube;
    vars I_scale_common_carotid_L and I_scale;
    vars u_ext_common_carotid_L and u_ext;
  enddef;
  def map between parameters and aortic_arch_III_module for
    vars u_0_aortic_arch_III and u_0;
    vars theta_aortic_arch_III and theta;
    vars l_aortic_arch_III and l;
    vars r_0_aortic_arch_III and r_0;
    vars m_tube_aortic_arch_III and m_tube;
    vars n_tube_aortic_arch_III and n_tube;
    vars I_scale_aortic_arch_III and I_scale;
    vars u_ext_aortic_arch_III and u_ext;
  enddef;
  def map between parameters and external_carotid_L_module for
    vars theta_external_carotid_L and theta;
    vars l_external_carotid_L and l;
    vars r_0_external_carotid_L and r_0;
    vars u_0_external_carotid_L and u_0;
    vars m_tube_external_carotid_L and m_tube;
    vars n_tube_external_carotid_L and n_tube;
    vars I_scale_external_carotid_L and I_scale;
    vars u_ext_external_carotid_L and u_ext;
  enddef;
  def map between parameters and internal_carotid_L_module for
    vars theta_internal_carotid_L and theta;
    vars l_internal_carotid_L and l;
    vars r_0_internal_carotid_L and r_0;
    vars u_0_internal_carotid_L and u_0;
    vars m_tube_internal_carotid_L and m_tube;
    vars n_tube_internal_carotid_L and n_tube;
    vars I_scale_internal_carotid_L and I_scale;
    vars u_ext_internal_carotid_L and u_ext;
  enddef;
  def map between parameters and subclavian_L_I_module for
    vars u_0_subclavian_L_I and u_0;
    vars theta_subclavian_L_I and theta;
    vars l_subclavian_L_I and l;
    vars r_0_subclavian_L_I and r_0;
    vars m_tube_subclavian_L_I and m_tube;
    vars n_tube_subclavian_L_I and n_tube;
    vars I_scale_subclavian_L_I and I_scale;
    vars u_ext_subclavian_L_I and u_ext;
  enddef;
  def map between parameters and aortic_arch_IV_module for
    vars theta_aortic_arch_IV and theta;
    vars l_aortic_arch_IV and l;
    vars r_0_aortic_arch_IV and r_0;
    vars u_0_aortic_arch_IV and u_0;
    vars m_tube_aortic_arch_IV and m_tube;
    vars n_tube_aortic_arch_IV and n_tube;
    vars I_scale_aortic_arch_IV and I_scale;
    vars u_ext_aortic_arch_IV and u_ext;
  enddef;
  def map between parameters and vertebral_L_module for
    vars theta_vertebral_L and theta;
    vars l_vertebral_L and l;
    vars r_0_vertebral_L and r_0;
    vars u_0_vertebral_L and u_0;
    vars m_tube_vertebral_L and m_tube;
    vars n_tube_vertebral_L and n_tube;
    vars I_scale_vertebral_L and I_scale;
    vars u_ext_vertebral_L and u_ext;
  enddef;
  def map between parameters and subclavian_L_II_module for
    vars theta_subclavian_L_II and theta;
    vars l_subclavian_L_II and l;
    vars r_0_subclavian_L_II and r_0;
    vars u_0_subclavian_L_II and u_0;
    vars m_tube_subclavian_L_II and m_tube;
    vars n_tube_subclavian_L_II and n_tube;
    vars I_scale_subclavian_L_II and I_scale;
    vars u_ext_subclavian_L_II and u_ext;
  enddef;
  def map between parameters and axillary_L_module for
    vars theta_axillary_L and theta;
    vars l_axillary_L and l;
    vars r_0_axillary_L and r_0;
    vars u_0_axillary_L and u_0;
    vars m_tube_axillary_L and m_tube;
    vars n_tube_axillary_L and n_tube;
    vars I_scale_axillary_L and I_scale;
    vars u_ext_axillary_L and u_ext;
  enddef;
  def map between parameters and brachial_L_module for
    vars u_0_brachial_L and u_0;
    vars theta_brachial_L and theta;
    vars l_brachial_L and l;
    vars r_0_brachial_L and r_0;
    vars m_tube_brachial_L and m_tube;
    vars n_tube_brachial_L and n_tube;
    vars I_scale_brachial_L and I_scale;
    vars u_ext_brachial_L and u_ext;
  enddef;
  def map between parameters and radial_L_module for
    vars theta_radial_L and theta;
    vars l_radial_L and l;
    vars r_0_radial_L and r_0;
    vars u_0_radial_L and u_0;
    vars m_tube_radial_L and m_tube;
    vars n_tube_radial_L and n_tube;
    vars I_scale_radial_L and I_scale;
    vars u_ext_radial_L and u_ext;
  enddef;
  def map between parameters and ulnar_L_I_module for
    vars u_0_ulnar_L_I and u_0;
    vars theta_ulnar_L_I and theta;
    vars l_ulnar_L_I and l;
    vars r_0_ulnar_L_I and r_0;
    vars m_tube_ulnar_L_I and m_tube;
    vars n_tube_ulnar_L_I and n_tube;
    vars I_scale_ulnar_L_I and I_scale;
    vars u_ext_ulnar_L_I and u_ext;
  enddef;
  def map between parameters and common_interosseous_L_module for
    vars theta_common_interosseous_L and theta;
    vars l_common_interosseous_L and l;
    vars r_0_common_interosseous_L and r_0;
    vars u_0_common_interosseous_L and u_0;
    vars m_tube_common_interosseous_L and m_tube;
    vars n_tube_common_interosseous_L and n_tube;
    vars I_scale_common_interosseous_L and I_scale;
    vars u_ext_common_interosseous_L and u_ext;
  enddef;
  def map between parameters and ulnar_L_II_module for
    vars theta_ulnar_L_II and theta;
    vars l_ulnar_L_II and l;
    vars r_0_ulnar_L_II and r_0;
    vars u_0_ulnar_L_II and u_0;
    vars m_tube_ulnar_L_II and m_tube;
    vars n_tube_ulnar_L_II and n_tube;
    vars I_scale_ulnar_L_II and I_scale;
    vars u_ext_ulnar_L_II and u_ext;
  enddef;
  def map between parameters and posterior_interosseous_L_module for
    vars theta_posterior_interosseous_L and theta;
    vars l_posterior_interosseous_L and l;
    vars r_0_posterior_interosseous_L and r_0;
    vars u_0_posterior_interosseous_L and u_0;
    vars m_tube_posterior_interosseous_L and m_tube;
    vars n_tube_posterior_interosseous_L and n_tube;
    vars I_scale_posterior_interosseous_L and I_scale;
    vars u_ext_posterior_interosseous_L and u_ext;
  enddef;
  def map between parameters and thoracic_aorta_I_module for
    vars u_0_thoracic_aorta_I and u_0;
    vars theta_thoracic_aorta_I and theta;
    vars l_thoracic_aorta_I and l;
    vars r_0_thoracic_aorta_I and r_0;
    vars m_tube_thoracic_aorta_I and m_tube;
    vars n_tube_thoracic_aorta_I and n_tube;
    vars I_scale_thoracic_aorta_I and I_scale;
    vars u_ext_thoracic_aorta_I and u_ext;
  enddef;
  def map between parameters and posterior_intercostal_T6_R_module for
    vars theta_posterior_intercostal_T6_R and theta;
    vars l_posterior_intercostal_T6_R and l;
    vars r_0_posterior_intercostal_T6_R and r_0;
    vars u_0_posterior_intercostal_T6_R and u_0;
    vars m_tube_posterior_intercostal_T6_R and m_tube;
    vars n_tube_posterior_intercostal_T6_R and n_tube;
    vars I_scale_posterior_intercostal_T6_R and I_scale;
    vars u_ext_posterior_intercostal_T6_R and u_ext;
  enddef;
  def map between parameters and thoracic_aorta_II_module for
    vars u_0_thoracic_aorta_II and u_0;
    vars theta_thoracic_aorta_II and theta;
    vars l_thoracic_aorta_II and l;
    vars r_0_thoracic_aorta_II and r_0;
    vars m_tube_thoracic_aorta_II and m_tube;
    vars n_tube_thoracic_aorta_II and n_tube;
    vars I_scale_thoracic_aorta_II and I_scale;
    vars u_ext_thoracic_aorta_II and u_ext;
  enddef;
  def map between parameters and posterior_intercostal_T6_L_module for
    vars theta_posterior_intercostal_T6_L and theta;
    vars l_posterior_intercostal_T6_L and l;
    vars r_0_posterior_intercostal_T6_L and r_0;
    vars u_0_posterior_intercostal_T6_L and u_0;
    vars m_tube_posterior_intercostal_T6_L and m_tube;
    vars n_tube_posterior_intercostal_T6_L and n_tube;
    vars I_scale_posterior_intercostal_T6_L and I_scale;
    vars u_ext_posterior_intercostal_T6_L and u_ext;
  enddef;
  def map between parameters and thoracic_aorta_III_module for
    vars u_0_thoracic_aorta_III and u_0;
    vars theta_thoracic_aorta_III and theta;
    vars l_thoracic_aorta_III and l;
    vars r_0_thoracic_aorta_III and r_0;
    vars m_tube_thoracic_aorta_III and m_tube;
    vars n_tube_thoracic_aorta_III and n_tube;
    vars I_scale_thoracic_aorta_III and I_scale;
    vars u_ext_thoracic_aorta_III and u_ext;
  enddef;
  def map between parameters and posterior_intercostal_T7_R_module for
    vars theta_posterior_intercostal_T7_R and theta;
    vars l_posterior_intercostal_T7_R and l;
    vars r_0_posterior_intercostal_T7_R and r_0;
    vars u_0_posterior_intercostal_T7_R and u_0;
    vars m_tube_posterior_intercostal_T7_R and m_tube;
    vars n_tube_posterior_intercostal_T7_R and n_tube;
    vars I_scale_posterior_intercostal_T7_R and I_scale;
    vars u_ext_posterior_intercostal_T7_R and u_ext;
  enddef;
  def map between parameters and thoracic_aorta_IV_module for
    vars u_0_thoracic_aorta_IV and u_0;
    vars theta_thoracic_aorta_IV and theta;
    vars l_thoracic_aorta_IV and l;
    vars r_0_thoracic_aorta_IV and r_0;
    vars m_tube_thoracic_aorta_IV and m_tube;
    vars n_tube_thoracic_aorta_IV and n_tube;
    vars I_scale_thoracic_aorta_IV and I_scale;
    vars u_ext_thoracic_aorta_IV and u_ext;
  enddef;
  def map between parameters and posterior_intercostal_T7_L_module for
    vars theta_posterior_intercostal_T7_L and theta;
    vars l_posterior_intercostal_T7_L and l;
    vars r_0_posterior_intercostal_T7_L and r_0;
    vars u_0_posterior_intercostal_T7_L and u_0;
    vars m_tube_posterior_intercostal_T7_L and m_tube;
    vars n_tube_posterior_intercostal_T7_L and n_tube;
    vars I_scale_posterior_intercostal_T7_L and I_scale;
    vars u_ext_posterior_intercostal_T7_L and u_ext;
  enddef;
  def map between parameters and thoracic_aorta_V_module for
    vars theta_thoracic_aorta_V and theta;
    vars l_thoracic_aorta_V and l;
    vars r_0_thoracic_aorta_V and r_0;
    vars u_0_thoracic_aorta_V and u_0;
    vars m_tube_thoracic_aorta_V and m_tube;
    vars n_tube_thoracic_aorta_V and n_tube;
    vars I_scale_thoracic_aorta_V and I_scale;
    vars u_ext_thoracic_aorta_V and u_ext;
  enddef;
  def map between parameters and thoracic_aorta_VI_module for
    vars u_0_thoracic_aorta_VI and u_0;
    vars theta_thoracic_aorta_VI and theta;
    vars l_thoracic_aorta_VI and l;
    vars r_0_thoracic_aorta_VI and r_0;
    vars m_tube_thoracic_aorta_VI and m_tube;
    vars n_tube_thoracic_aorta_VI and n_tube;
    vars I_scale_thoracic_aorta_VI and I_scale;
    vars u_ext_thoracic_aorta_VI and u_ext;
  enddef;
  def map between parameters and celiac_trunk_module for
    vars u_0_celiac_trunk and u_0;
    vars theta_celiac_trunk and theta;
    vars l_celiac_trunk and l;
    vars r_0_celiac_trunk and r_0;
    vars m_tube_celiac_trunk and m_tube;
    vars n_tube_celiac_trunk and n_tube;
    vars I_scale_celiac_trunk and I_scale;
    vars u_ext_celiac_trunk and u_ext;
  enddef;
  def map between parameters and abdominal_aorta_I_module for
    vars u_0_abdominal_aorta_I and u_0;
    vars theta_abdominal_aorta_I and theta;
    vars l_abdominal_aorta_I and l;
    vars r_0_abdominal_aorta_I and r_0;
    vars m_tube_abdominal_aorta_I and m_tube;
    vars n_tube_abdominal_aorta_I and n_tube;
    vars I_scale_abdominal_aorta_I and I_scale;
    vars u_ext_abdominal_aorta_I and u_ext;
  enddef;
  def map between parameters and common_hepatic_module for
    vars theta_common_hepatic and theta;
    vars l_common_hepatic and l;
    vars r_0_common_hepatic and r_0;
    vars u_0_common_hepatic and u_0;
    vars m_tube_common_hepatic and m_tube;
    vars n_tube_common_hepatic and n_tube;
    vars I_scale_common_hepatic and I_scale;
    vars u_ext_common_hepatic and u_ext;
  enddef;
  def map between parameters and splenic_I_module for
    vars u_0_splenic_I and u_0;
    vars theta_splenic_I and theta;
    vars l_splenic_I and l;
    vars r_0_splenic_I and r_0;
    vars m_tube_splenic_I and m_tube;
    vars n_tube_splenic_I and n_tube;
    vars I_scale_splenic_I and I_scale;
    vars u_ext_splenic_I and u_ext;
  enddef;
  def map between parameters and left_gastric_module for
    vars theta_left_gastric and theta;
    vars l_left_gastric and l;
    vars r_0_left_gastric and r_0;
    vars u_0_left_gastric and u_0;
    vars m_tube_left_gastric and m_tube;
    vars n_tube_left_gastric and n_tube;
    vars I_scale_left_gastric and I_scale;
    vars u_ext_left_gastric and u_ext;
  enddef;
  def map between parameters and splenic_II_module for
    vars theta_splenic_II and theta;
    vars l_splenic_II and l;
    vars r_0_splenic_II and r_0;
    vars u_0_splenic_II and u_0;
    vars m_tube_splenic_II and m_tube;
    vars n_tube_splenic_II and n_tube;
    vars I_scale_splenic_II and I_scale;
    vars u_ext_splenic_II and u_ext;
  enddef;
  def map between parameters and superior_mesenteric_module for
    vars theta_superior_mesenteric and theta;
    vars l_superior_mesenteric and l;
    vars r_0_superior_mesenteric and r_0;
    vars u_0_superior_mesenteric and u_0;
    vars m_tube_superior_mesenteric and m_tube;
    vars n_tube_superior_mesenteric and n_tube;
    vars I_scale_superior_mesenteric and I_scale;
    vars u_ext_superior_mesenteric and u_ext;
  enddef;
  def map between parameters and abdominal_aorta_II_module for
    vars u_0_abdominal_aorta_II and u_0;
    vars theta_abdominal_aorta_II and theta;
    vars l_abdominal_aorta_II and l;
    vars r_0_abdominal_aorta_II and r_0;
    vars m_tube_abdominal_aorta_II and m_tube;
    vars n_tube_abdominal_aorta_II and n_tube;
    vars I_scale_abdominal_aorta_II and I_scale;
    vars u_ext_abdominal_aorta_II and u_ext;
  enddef;
  def map between parameters and renal_L_module for
    vars theta_renal_L and theta;
    vars l_renal_L and l;
    vars r_0_renal_L and r_0;
    vars u_0_renal_L and u_0;
    vars m_tube_renal_L and m_tube;
    vars n_tube_renal_L and n_tube;
    vars I_scale_renal_L and I_scale;
    vars u_ext_renal_L and u_ext;
  enddef;
  def map between parameters and abdominal_aorta_III_module for
    vars u_0_abdominal_aorta_III and u_0;
    vars theta_abdominal_aorta_III and theta;
    vars l_abdominal_aorta_III and l;
    vars r_0_abdominal_aorta_III and r_0;
    vars m_tube_abdominal_aorta_III and m_tube;
    vars n_tube_abdominal_aorta_III and n_tube;
    vars I_scale_abdominal_aorta_III and I_scale;
    vars u_ext_abdominal_aorta_III and u_ext;
  enddef;
  def map between parameters and renal_R_module for
    vars theta_renal_R and theta;
    vars l_renal_R and l;
    vars r_0_renal_R and r_0;
    vars u_0_renal_R and u_0;
    vars m_tube_renal_R and m_tube;
    vars n_tube_renal_R and n_tube;
    vars I_scale_renal_R and I_scale;
    vars u_ext_renal_R and u_ext;
  enddef;
  def map between parameters and abdominal_aorta_IV_module for
    vars u_0_abdominal_aorta_IV and u_0;
    vars theta_abdominal_aorta_IV and theta;
    vars l_abdominal_aorta_IV and l;
    vars r_0_abdominal_aorta_IV and r_0;
    vars m_tube_abdominal_aorta_IV and m_tube;
    vars n_tube_abdominal_aorta_IV and n_tube;
    vars I_scale_abdominal_aorta_IV and I_scale;
    vars u_ext_abdominal_aorta_IV and u_ext;
  enddef;
  def map between parameters and inferior_mesenteric_module for
    vars theta_inferior_mesenteric and theta;
    vars l_inferior_mesenteric and l;
    vars r_0_inferior_mesenteric and r_0;
    vars u_0_inferior_mesenteric and u_0;
    vars m_tube_inferior_mesenteric and m_tube;
    vars n_tube_inferior_mesenteric and n_tube;
    vars I_scale_inferior_mesenteric and I_scale;
    vars u_ext_inferior_mesenteric and u_ext;
  enddef;
  def map between parameters and abdominal_aorta_V_module for
    vars u_0_abdominal_aorta_V and u_0;
    vars theta_abdominal_aorta_V and theta;
    vars l_abdominal_aorta_V and l;
    vars r_0_abdominal_aorta_V and r_0;
    vars m_tube_abdominal_aorta_V and m_tube;
    vars n_tube_abdominal_aorta_V and n_tube;
    vars I_scale_abdominal_aorta_V and I_scale;
    vars u_ext_abdominal_aorta_V and u_ext;
  enddef;
  def map between parameters and common_iliac_R_module for
    vars u_0_common_iliac_R and u_0;
    vars theta_common_iliac_R and theta;
    vars l_common_iliac_R and l;
    vars r_0_common_iliac_R and r_0;
    vars m_tube_common_iliac_R and m_tube;
    vars n_tube_common_iliac_R and n_tube;
    vars I_scale_common_iliac_R and I_scale;
    vars u_ext_common_iliac_R and u_ext;
  enddef;
  def map between parameters and common_iliac_L_module for
    vars u_0_common_iliac_L and u_0;
    vars theta_common_iliac_L and theta;
    vars l_common_iliac_L and l;
    vars r_0_common_iliac_L and r_0;
    vars m_tube_common_iliac_L and m_tube;
    vars n_tube_common_iliac_L and n_tube;
    vars I_scale_common_iliac_L and I_scale;
    vars u_ext_common_iliac_L and u_ext;
  enddef;
  def map between parameters and external_iliac_R_module for
    vars theta_external_iliac_R and theta;
    vars l_external_iliac_R and l;
    vars r_0_external_iliac_R and r_0;
    vars u_0_external_iliac_R and u_0;
    vars m_tube_external_iliac_R and m_tube;
    vars n_tube_external_iliac_R and n_tube;
    vars I_scale_external_iliac_R and I_scale;
    vars u_ext_external_iliac_R and u_ext;
  enddef;
  def map between parameters and internal_iliac_R_module for
    vars theta_internal_iliac_R and theta;
    vars l_internal_iliac_R and l;
    vars r_0_internal_iliac_R and r_0;
    vars u_0_internal_iliac_R and u_0;
    vars m_tube_internal_iliac_R and m_tube;
    vars n_tube_internal_iliac_R and n_tube;
    vars I_scale_internal_iliac_R and I_scale;
    vars u_ext_internal_iliac_R and u_ext;
  enddef;
  def map between parameters and femoral_R_I_module for
    vars u_0_femoral_R_I and u_0;
    vars theta_femoral_R_I and theta;
    vars l_femoral_R_I and l;
    vars r_0_femoral_R_I and r_0;
    vars m_tube_femoral_R_I and m_tube;
    vars n_tube_femoral_R_I and n_tube;
    vars I_scale_femoral_R_I and I_scale;
    vars u_ext_femoral_R_I and u_ext;
  enddef;
  def map between parameters and profunda_femoris_R_module for
    vars theta_profunda_femoris_R and theta;
    vars l_profunda_femoris_R and l;
    vars r_0_profunda_femoris_R and r_0;
    vars u_0_profunda_femoris_R and u_0;
    vars m_tube_profunda_femoris_R and m_tube;
    vars n_tube_profunda_femoris_R and n_tube;
    vars I_scale_profunda_femoris_R and I_scale;
    vars u_ext_profunda_femoris_R and u_ext;
  enddef;
  def map between parameters and femoral_R_II_module for
    vars theta_femoral_R_II and theta;
    vars l_femoral_R_II and l;
    vars r_0_femoral_R_II and r_0;
    vars u_0_femoral_R_II and u_0;
    vars m_tube_femoral_R_II and m_tube;
    vars n_tube_femoral_R_II and n_tube;
    vars I_scale_femoral_R_II and I_scale;
    vars u_ext_femoral_R_II and u_ext;
  enddef;
  def map between parameters and popliteal_R_I_module for
    vars u_0_popliteal_R_I and u_0;
    vars theta_popliteal_R_I and theta;
    vars l_popliteal_R_I and l;
    vars r_0_popliteal_R_I and r_0;
    vars m_tube_popliteal_R_I and m_tube;
    vars n_tube_popliteal_R_I and n_tube;
    vars I_scale_popliteal_R_I and I_scale;
    vars u_ext_popliteal_R_I and u_ext;
  enddef;
  def map between parameters and anterior_tibial_R_module for
    vars theta_anterior_tibial_R and theta;
    vars l_anterior_tibial_R and l;
    vars r_0_anterior_tibial_R and r_0;
    vars u_0_anterior_tibial_R and u_0;
    vars m_tube_anterior_tibial_R and m_tube;
    vars n_tube_anterior_tibial_R and n_tube;
    vars I_scale_anterior_tibial_R and I_scale;
    vars u_ext_anterior_tibial_R and u_ext;
  enddef;
  def map between parameters and popliteal_R_II_module for
    vars theta_popliteal_R_II and theta;
    vars l_popliteal_R_II and l;
    vars r_0_popliteal_R_II and r_0;
    vars u_0_popliteal_R_II and u_0;
    vars m_tube_popliteal_R_II and m_tube;
    vars n_tube_popliteal_R_II and n_tube;
    vars I_scale_popliteal_R_II and I_scale;
    vars u_ext_popliteal_R_II and u_ext;
  enddef;
  def map between parameters and tibiofibular_trunk_R_module for
    vars theta_tibiofibular_trunk_R and theta;
    vars l_tibiofibular_trunk_R and l;
    vars r_0_tibiofibular_trunk_R and r_0;
    vars u_0_tibiofibular_trunk_R and u_0;
    vars m_tube_tibiofibular_trunk_R and m_tube;
    vars n_tube_tibiofibular_trunk_R and n_tube;
    vars I_scale_tibiofibular_trunk_R and I_scale;
    vars u_ext_tibiofibular_trunk_R and u_ext;
  enddef;
  def map between parameters and posterior_tibial_R_module for
    vars theta_posterior_tibial_R and theta;
    vars l_posterior_tibial_R and l;
    vars r_0_posterior_tibial_R and r_0;
    vars u_0_posterior_tibial_R and u_0;
    vars m_tube_posterior_tibial_R and m_tube;
    vars n_tube_posterior_tibial_R and n_tube;
    vars I_scale_posterior_tibial_R and I_scale;
    vars u_ext_posterior_tibial_R and u_ext;
  enddef;
  def map between parameters and external_iliac_L_module for
    vars theta_external_iliac_L and theta;
    vars l_external_iliac_L and l;
    vars r_0_external_iliac_L and r_0;
    vars u_0_external_iliac_L and u_0;
    vars m_tube_external_iliac_L and m_tube;
    vars n_tube_external_iliac_L and n_tube;
    vars I_scale_external_iliac_L and I_scale;
    vars u_ext_external_iliac_L and u_ext;
  enddef;
  def map between parameters and internal_iliac_L_module for
    vars theta_internal_iliac_L and theta;
    vars l_internal_iliac_L and l;
    vars r_0_internal_iliac_L and r_0;
    vars u_0_internal_iliac_L and u_0;
    vars m_tube_internal_iliac_L and m_tube;
    vars n_tube_internal_iliac_L and n_tube;
    vars I_scale_internal_iliac_L and I_scale;
    vars u_ext_internal_iliac_L and u_ext;
  enddef;
  def map between parameters and femoral_L_I_module for
    vars u_0_femoral_L_I and u_0;
    vars theta_femoral_L_I and theta;
    vars l_femoral_L_I and l;
    vars r_0_femoral_L_I and r_0;
    vars m_tube_femoral_L_I and m_tube;
    vars n_tube_femoral_L_I and n_tube;
    vars I_scale_femoral_L_I and I_scale;
    vars u_ext_femoral_L_I and u_ext;
  enddef;
  def map between parameters and profunda_femoris_L_module for
    vars theta_profunda_femoris_L and theta;
    vars l_profunda_femoris_L and l;
    vars r_0_profunda_femoris_L and r_0;
    vars u_0_profunda_femoris_L and u_0;
    vars m_tube_profunda_femoris_L and m_tube;
    vars n_tube_profunda_femoris_L and n_tube;
    vars I_scale_profunda_femoris_L and I_scale;
    vars u_ext_profunda_femoris_L and u_ext;
  enddef;
  def map between parameters and femoral_L_II_module for
    vars theta_femoral_L_II and theta;
    vars l_femoral_L_II and l;
    vars r_0_femoral_L_II and r_0;
    vars u_0_femoral_L_II and u_0;
    vars m_tube_femoral_L_II and m_tube;
    vars n_tube_femoral_L_II and n_tube;
    vars I_scale_femoral_L_II and I_scale;
    vars u_ext_femoral_L_II and u_ext;
  enddef;
  def map between parameters and popliteal_L_I_module for
    vars u_0_popliteal_L_I and u_0;
    vars theta_popliteal_L_I and theta;
    vars l_popliteal_L_I and l;
    vars r_0_popliteal_L_I and r_0;
    vars m_tube_popliteal_L_I and m_tube;
    vars n_tube_popliteal_L_I and n_tube;
    vars I_scale_popliteal_L_I and I_scale;
    vars u_ext_popliteal_L_I and u_ext;
  enddef;
  def map between parameters and anterior_tibial_L_module for
    vars theta_anterior_tibial_L and theta;
    vars l_anterior_tibial_L and l;
    vars r_0_anterior_tibial_L and r_0;
    vars u_0_anterior_tibial_L and u_0;
    vars m_tube_anterior_tibial_L and m_tube;
    vars n_tube_anterior_tibial_L and n_tube;
    vars I_scale_anterior_tibial_L and I_scale;
    vars u_ext_anterior_tibial_L and u_ext;
  enddef;
  def map between parameters and popliteal_L_II_module for
    vars theta_popliteal_L_II and theta;
    vars l_popliteal_L_II and l;
    vars r_0_popliteal_L_II and r_0;
    vars u_0_popliteal_L_II and u_0;
    vars m_tube_popliteal_L_II and m_tube;
    vars n_tube_popliteal_L_II and n_tube;
    vars I_scale_popliteal_L_II and I_scale;
    vars u_ext_popliteal_L_II and u_ext;
  enddef;
  def map between parameters and tibiofibular_trunk_L_module for
    vars theta_tibiofibular_trunk_L and theta;
    vars l_tibiofibular_trunk_L and l;
    vars r_0_tibiofibular_trunk_L and r_0;
    vars u_0_tibiofibular_trunk_L and u_0;
    vars m_tube_tibiofibular_trunk_L and m_tube;
    vars n_tube_tibiofibular_trunk_L and n_tube;
    vars I_scale_tibiofibular_trunk_L and I_scale;
    vars u_ext_tibiofibular_trunk_L and u_ext;
  enddef;
  def map between parameters and posterior_tibial_L_module for
    vars theta_posterior_tibial_L and theta;
    vars l_posterior_tibial_L and l;
    vars r_0_posterior_tibial_L and r_0;
    vars u_0_posterior_tibial_L and u_0;
    vars m_tube_posterior_tibial_L and m_tube;
    vars n_tube_posterior_tibial_L and n_tube;
    vars I_scale_posterior_tibial_L and I_scale;
    vars u_ext_posterior_tibial_L and u_ext;
  enddef;
  def map between parameters and external_carotid_R_T_module for
    vars R_T_external_carotid_R_T and R_T;
    vars C_T_external_carotid_R_T and C_T;
    vars q_us_external_carotid_R_T and q_us;
    vars q_init_external_carotid_R_T and q_init;
    vars u_ext_external_carotid_R_T and u_ext;
    vars u_out_external_carotid_R_T and u_out;
  enddef;
  def map between parameters and internal_carotid_R_T_module for
    vars R_T_internal_carotid_R_T and R_T;
    vars C_T_internal_carotid_R_T and C_T;
    vars q_us_internal_carotid_R_T and q_us;
    vars q_init_internal_carotid_R_T and q_init;
    vars u_ext_internal_carotid_R_T and u_ext;
    vars u_out_internal_carotid_R_T and u_out;
  enddef;
  def map between parameters and vertebral_R_T_module for
    vars R_T_vertebral_R_T and R_T;
    vars C_T_vertebral_R_T and C_T;
    vars q_us_vertebral_R_T and q_us;
    vars q_init_vertebral_R_T and q_init;
    vars u_ext_vertebral_R_T and u_ext;
    vars u_out_vertebral_R_T and u_out;
  enddef;
  def map between parameters and radial_R_T_module for
    vars R_T_radial_R_T and R_T;
    vars C_T_radial_R_T and C_T;
    vars q_us_radial_R_T and q_us;
    vars q_init_radial_R_T and q_init;
    vars u_ext_radial_R_T and u_ext;
    vars u_out_radial_R_T and u_out;
  enddef;
  def map between parameters and posterior_interosseous_R_T_module for
    vars R_T_posterior_interosseous_R_T and R_T;
    vars C_T_posterior_interosseous_R_T and C_T;
    vars q_us_posterior_interosseous_R_T and q_us;
    vars q_init_posterior_interosseous_R_T and q_init;
    vars u_ext_posterior_interosseous_R_T and u_ext;
    vars u_out_posterior_interosseous_R_T and u_out;
  enddef;
  def map between parameters and ulnar_R_II_T_module for
    vars R_T_ulnar_R_II_T and R_T;
    vars C_T_ulnar_R_II_T and C_T;
    vars q_us_ulnar_R_II_T and q_us;
    vars q_init_ulnar_R_II_T and q_init;
    vars u_ext_ulnar_R_II_T and u_ext;
    vars u_out_ulnar_R_II_T and u_out;
  enddef;
  def map between parameters and external_carotid_L_T_module for
    vars R_T_external_carotid_L_T and R_T;
    vars C_T_external_carotid_L_T and C_T;
    vars q_us_external_carotid_L_T and q_us;
    vars q_init_external_carotid_L_T and q_init;
    vars u_ext_external_carotid_L_T and u_ext;
    vars u_out_external_carotid_L_T and u_out;
  enddef;
  def map between parameters and internal_carotid_L_T_module for
    vars R_T_internal_carotid_L_T and R_T;
    vars C_T_internal_carotid_L_T and C_T;
    vars q_us_internal_carotid_L_T and q_us;
    vars q_init_internal_carotid_L_T and q_init;
    vars u_ext_internal_carotid_L_T and u_ext;
    vars u_out_internal_carotid_L_T and u_out;
  enddef;
  def map between parameters and vertebral_L_T_module for
    vars R_T_vertebral_L_T and R_T;
    vars C_T_vertebral_L_T and C_T;
    vars q_us_vertebral_L_T and q_us;
    vars q_init_vertebral_L_T and q_init;
    vars u_ext_vertebral_L_T and u_ext;
    vars u_out_vertebral_L_T and u_out;
  enddef;
  def map between parameters and radial_L_T_module for
    vars R_T_radial_L_T and R_T;
    vars C_T_radial_L_T and C_T;
    vars q_us_radial_L_T and q_us;
    vars q_init_radial_L_T and q_init;
    vars u_ext_radial_L_T and u_ext;
    vars u_out_radial_L_T and u_out;
  enddef;
  def map between parameters and posterior_interosseous_L_T_module for
    vars R_T_posterior_interosseous_L_T and R_T;
    vars C_T_posterior_interosseous_L_T and C_T;
    vars q_us_posterior_interosseous_L_T and q_us;
    vars q_init_posterior_interosseous_L_T and q_init;
    vars u_ext_posterior_interosseous_L_T and u_ext;
    vars u_out_posterior_interosseous_L_T and u_out;
  enddef;
  def map between parameters and ulnar_L_II_T_module for
    vars R_T_ulnar_L_II_T and R_T;
    vars C_T_ulnar_L_II_T and C_T;
    vars q_us_ulnar_L_II_T and q_us;
    vars q_init_ulnar_L_II_T and q_init;
    vars u_ext_ulnar_L_II_T and u_ext;
    vars u_out_ulnar_L_II_T and u_out;
  enddef;
  def map between parameters and posterior_intercostal_T6_R_T_module for
    vars R_T_posterior_intercostal_T6_R_T and R_T;
    vars C_T_posterior_intercostal_T6_R_T and C_T;
    vars q_us_posterior_intercostal_T6_R_T and q_us;
    vars q_init_posterior_intercostal_T6_R_T and q_init;
    vars u_ext_posterior_intercostal_T6_R_T and u_ext;
    vars u_out_posterior_intercostal_T6_R_T and u_out;
  enddef;
  def map between parameters and posterior_intercostal_T6_L_T_module for
    vars R_T_posterior_intercostal_T6_L_T and R_T;
    vars C_T_posterior_intercostal_T6_L_T and C_T;
    vars q_us_posterior_intercostal_T6_L_T and q_us;
    vars q_init_posterior_intercostal_T6_L_T and q_init;
    vars u_ext_posterior_intercostal_T6_L_T and u_ext;
    vars u_out_posterior_intercostal_T6_L_T and u_out;
  enddef;
  def map between parameters and posterior_intercostal_T7_R_T_module for
    vars R_T_posterior_intercostal_T7_R_T and R_T;
    vars C_T_posterior_intercostal_T7_R_T and C_T;
    vars q_us_posterior_intercostal_T7_R_T and q_us;
    vars q_init_posterior_intercostal_T7_R_T and q_init;
    vars u_ext_posterior_intercostal_T7_R_T and u_ext;
    vars u_out_posterior_intercostal_T7_R_T and u_out;
  enddef;
  def map between parameters and posterior_intercostal_T7_L_T_module for
    vars R_T_posterior_intercostal_T7_L_T and R_T;
    vars C_T_posterior_intercostal_T7_L_T and C_T;
    vars q_us_posterior_intercostal_T7_L_T and q_us;
    vars q_init_posterior_intercostal_T7_L_T and q_init;
    vars u_ext_posterior_intercostal_T7_L_T and u_ext;
    vars u_out_posterior_intercostal_T7_L_T and u_out;
  enddef;
  def map between parameters and common_hepatic_T_module for
    vars R_T_common_hepatic_T and R_T;
    vars C_T_common_hepatic_T and C_T;
    vars q_us_common_hepatic_T and q_us;
    vars q_init_common_hepatic_T and q_init;
    vars u_ext_common_hepatic_T and u_ext;
    vars u_out_common_hepatic_T and u_out;
  enddef;
  def map between parameters and left_gastric_T_module for
    vars R_T_left_gastric_T and R_T;
    vars C_T_left_gastric_T and C_T;
    vars q_us_left_gastric_T and q_us;
    vars q_init_left_gastric_T and q_init;
    vars u_ext_left_gastric_T and u_ext;
    vars u_out_left_gastric_T and u_out;
  enddef;
  def map between parameters and splenic_II_T_module for
    vars R_T_splenic_II_T and R_T;
    vars C_T_splenic_II_T and C_T;
    vars q_us_splenic_II_T and q_us;
    vars q_init_splenic_II_T and q_init;
    vars u_ext_splenic_II_T and u_ext;
    vars u_out_splenic_II_T and u_out;
  enddef;
  def map between parameters and superior_mesenteric_T_module for
    vars R_T_superior_mesenteric_T and R_T;
    vars C_T_superior_mesenteric_T and C_T;
    vars q_us_superior_mesenteric_T and q_us;
    vars q_init_superior_mesenteric_T and q_init;
    vars u_ext_superior_mesenteric_T and u_ext;
    vars u_out_superior_mesenteric_T and u_out;
  enddef;
  def map between parameters and renal_L_T_module for
    vars R_T_renal_L_T and R_T;
    vars C_T_renal_L_T and C_T;
    vars q_us_renal_L_T and q_us;
    vars q_init_renal_L_T and q_init;
    vars u_ext_renal_L_T and u_ext;
    vars u_out_renal_L_T and u_out;
  enddef;
  def map between parameters and renal_R_T_module for
    vars R_T_renal_R_T and R_T;
    vars C_T_renal_R_T and C_T;
    vars q_us_renal_R_T and q_us;
    vars q_init_renal_R_T and q_init;
    vars u_ext_renal_R_T and u_ext;
    vars u_out_renal_R_T and u_out;
  enddef;
  def map between parameters and inferior_mesenteric_T_module for
    vars R_T_inferior_mesenteric_T and R_T;
    vars C_T_inferior_mesenteric_T and C_T;
    vars q_us_inferior_mesenteric_T and q_us;
    vars q_init_inferior_mesenteric_T and q_init;
    vars u_ext_inferior_mesenteric_T and u_ext;
    vars u_out_inferior_mesenteric_T and u_out;
  enddef;
  def map between parameters and internal_iliac_R_T_module for
    vars R_T_internal_iliac_R_T and R_T;
    vars C_T_internal_iliac_R_T and C_T;
    vars q_us_internal_iliac_R_T and q_us;
    vars q_init_internal_iliac_R_T and q_init;
    vars u_ext_internal_iliac_R_T and u_ext;
    vars u_out_internal_iliac_R_T and u_out;
  enddef;
  def map between parameters and profunda_femoris_R_T_module for
    vars R_T_profunda_femoris_R_T and R_T;
    vars C_T_profunda_femoris_R_T and C_T;
    vars q_us_profunda_femoris_R_T and q_us;
    vars q_init_profunda_femoris_R_T and q_init;
    vars u_ext_profunda_femoris_R_T and u_ext;
    vars u_out_profunda_femoris_R_T and u_out;
  enddef;
  def map between parameters and anterior_tibial_R_T_module for
    vars R_T_anterior_tibial_R_T and R_T;
    vars C_T_anterior_tibial_R_T and C_T;
    vars q_us_anterior_tibial_R_T and q_us;
    vars q_init_anterior_tibial_R_T and q_init;
    vars u_ext_anterior_tibial_R_T and u_ext;
    vars u_out_anterior_tibial_R_T and u_out;
  enddef;
  def map between parameters and posterior_tibial_R_T_module for
    vars R_T_posterior_tibial_R_T and R_T;
    vars C_T_posterior_tibial_R_T and C_T;
    vars q_us_posterior_tibial_R_T and q_us;
    vars q_init_posterior_tibial_R_T and q_init;
    vars u_ext_posterior_tibial_R_T and u_ext;
    vars u_out_posterior_tibial_R_T and u_out;
  enddef;
  def map between parameters and internal_iliac_L_T_module for
    vars R_T_internal_iliac_L_T and R_T;
    vars C_T_internal_iliac_L_T and C_T;
    vars q_us_internal_iliac_L_T and q_us;
    vars q_init_internal_iliac_L_T and q_init;
    vars u_ext_internal_iliac_L_T and u_ext;
    vars u_out_internal_iliac_L_T and u_out;
  enddef;
  def map between parameters and profunda_femoris_L_T_module for
    vars R_T_profunda_femoris_L_T and R_T;
    vars C_T_profunda_femoris_L_T and C_T;
    vars q_us_profunda_femoris_L_T and q_us;
    vars q_init_profunda_femoris_L_T and q_init;
    vars u_ext_profunda_femoris_L_T and u_ext;
    vars u_out_profunda_femoris_L_T and u_out;
  enddef;
  def map between parameters and anterior_tibial_L_T_module for
    vars R_T_anterior_tibial_L_T and R_T;
    vars C_T_anterior_tibial_L_T and C_T;
    vars q_us_anterior_tibial_L_T and q_us;
    vars q_init_anterior_tibial_L_T and q_init;
    vars u_ext_anterior_tibial_L_T and u_ext;
    vars u_out_anterior_tibial_L_T and u_out;
  enddef;
  def map between parameters and posterior_tibial_L_T_module for
    vars R_T_posterior_tibial_L_T and R_T;
    vars C_T_posterior_tibial_L_T and C_T;
    vars q_us_posterior_tibial_L_T and q_us;
    vars q_init_posterior_tibial_L_T and q_init;
    vars u_ext_posterior_tibial_L_T and u_ext;
    vars u_out_posterior_tibial_L_T and u_out;
  enddef;
  def map between parameters and K_tube_aortic_arch_I_module for
    vars E_K_tube_aortic_arch_I and E;
    vars K_m_K_tube_aortic_arch_I and K_m;
  enddef;
  def map between parameters and K_tube_brachiocephalic_trunk_module for
    vars E_K_tube_brachiocephalic_trunk and E;
    vars K_m_K_tube_brachiocephalic_trunk and K_m;
  enddef;
  def map between parameters and K_tube_aortic_arch_II_module for
    vars E_K_tube_aortic_arch_II and E;
    vars K_m_K_tube_aortic_arch_II and K_m;
  enddef;
  def map between parameters and K_tube_subclavian_R_I_module for
    vars E_K_tube_subclavian_R_I and E;
    vars K_m_K_tube_subclavian_R_I and K_m;
  enddef;
  def map between parameters and K_tube_common_carotid_R_module for
    vars E_K_tube_common_carotid_R and E;
    vars K_m_K_tube_common_carotid_R and K_m;
  enddef;
  def map between parameters and K_tube_vertebral_R_module for
    vars E_K_tube_vertebral_R and E;
    vars K_m_K_tube_vertebral_R and K_m;
  enddef;
  def map between parameters and K_tube_subclavian_R_II_module for
    vars E_K_tube_subclavian_R_II and E;
    vars K_m_K_tube_subclavian_R_II and K_m;
  enddef;
  def map between parameters and K_tube_axillary_R_module for
    vars E_K_tube_axillary_R and E;
    vars K_m_K_tube_axillary_R and K_m;
  enddef;
  def map between parameters and K_tube_brachial_R_module for
    vars E_K_tube_brachial_R and E;
    vars K_m_K_tube_brachial_R and K_m;
  enddef;
  def map between parameters and K_tube_radial_R_module for
    vars E_K_tube_radial_R and E;
    vars K_m_K_tube_radial_R and K_m;
  enddef;
  def map between parameters and K_tube_ulnar_R_I_module for
    vars E_K_tube_ulnar_R_I and E;
    vars K_m_K_tube_ulnar_R_I and K_m;
  enddef;
  def map between parameters and K_tube_common_interosseous_R_module for
    vars E_K_tube_common_interosseous_R and E;
    vars K_m_K_tube_common_interosseous_R and K_m;
  enddef;
  def map between parameters and K_tube_ulnar_R_II_module for
    vars E_K_tube_ulnar_R_II and E;
    vars K_m_K_tube_ulnar_R_II and K_m;
  enddef;
  def map between parameters and K_tube_posterior_interosseous_R_module for
    vars E_K_tube_posterior_interosseous_R and E;
    vars K_m_K_tube_posterior_interosseous_R and K_m;
  enddef;
  def map between parameters and K_tube_external_carotid_R_module for
    vars E_K_tube_external_carotid_R and E;
    vars K_m_K_tube_external_carotid_R and K_m;
  enddef;
  def map between parameters and K_tube_internal_carotid_R_module for
    vars E_K_tube_internal_carotid_R and E;
    vars K_m_K_tube_internal_carotid_R and K_m;
  enddef;
  def map between parameters and K_tube_common_carotid_L_module for
    vars E_K_tube_common_carotid_L and E;
    vars K_m_K_tube_common_carotid_L and K_m;
  enddef;
  def map between parameters and K_tube_aortic_arch_III_module for
    vars E_K_tube_aortic_arch_III and E;
    vars K_m_K_tube_aortic_arch_III and K_m;
  enddef;
  def map between parameters and K_tube_external_carotid_L_module for
    vars E_K_tube_external_carotid_L and E;
    vars K_m_K_tube_external_carotid_L and K_m;
  enddef;
  def map between parameters and K_tube_internal_carotid_L_module for
    vars E_K_tube_internal_carotid_L and E;
    vars K_m_K_tube_internal_carotid_L and K_m;
  enddef;
  def map between parameters and K_tube_subclavian_L_I_module for
    vars E_K_tube_subclavian_L_I and E;
    vars K_m_K_tube_subclavian_L_I and K_m;
  enddef;
  def map between parameters and K_tube_aortic_arch_IV_module for
    vars E_K_tube_aortic_arch_IV and E;
    vars K_m_K_tube_aortic_arch_IV and K_m;
  enddef;
  def map between parameters and K_tube_vertebral_L_module for
    vars E_K_tube_vertebral_L and E;
    vars K_m_K_tube_vertebral_L and K_m;
  enddef;
  def map between parameters and K_tube_subclavian_L_II_module for
    vars E_K_tube_subclavian_L_II and E;
    vars K_m_K_tube_subclavian_L_II and K_m;
  enddef;
  def map between parameters and K_tube_axillary_L_module for
    vars E_K_tube_axillary_L and E;
    vars K_m_K_tube_axillary_L and K_m;
  enddef;
  def map between parameters and K_tube_brachial_L_module for
    vars E_K_tube_brachial_L and E;
    vars K_m_K_tube_brachial_L and K_m;
  enddef;
  def map between parameters and K_tube_radial_L_module for
    vars E_K_tube_radial_L and E;
    vars K_m_K_tube_radial_L and K_m;
  enddef;
  def map between parameters and K_tube_ulnar_L_I_module for
    vars E_K_tube_ulnar_L_I and E;
    vars K_m_K_tube_ulnar_L_I and K_m;
  enddef;
  def map between parameters and K_tube_common_interosseous_L_module for
    vars E_K_tube_common_interosseous_L and E;
    vars K_m_K_tube_common_interosseous_L and K_m;
  enddef;
  def map between parameters and K_tube_ulnar_L_II_module for
    vars E_K_tube_ulnar_L_II and E;
    vars K_m_K_tube_ulnar_L_II and K_m;
  enddef;
  def map between parameters and K_tube_posterior_interosseous_L_module for
    vars E_K_tube_posterior_interosseous_L and E;
    vars K_m_K_tube_posterior_interosseous_L and K_m;
  enddef;
  def map between parameters and K_tube_thoracic_aorta_I_module for
    vars E_K_tube_thoracic_aorta_I and E;
    vars K_m_K_tube_thoracic_aorta_I and K_m;
  enddef;
  def map between parameters and K_tube_posterior_intercostal_T6_R_module for
    vars E_K_tube_posterior_intercostal_T6_R and E;
    vars K_m_K_tube_posterior_intercostal_T6_R and K_m;
  enddef;
  def map between parameters and K_tube_thoracic_aorta_II_module for
    vars E_K_tube_thoracic_aorta_II and E;
    vars K_m_K_tube_thoracic_aorta_II and K_m;
  enddef;
  def map between parameters and K_tube_posterior_intercostal_T6_L_module for
    vars E_K_tube_posterior_intercostal_T6_L and E;
    vars K_m_K_tube_posterior_intercostal_T6_L and K_m;
  enddef;
  def map between parameters and K_tube_thoracic_aorta_III_module for
    vars E_K_tube_thoracic_aorta_III and E;
    vars K_m_K_tube_thoracic_aorta_III and K_m;
  enddef;
  def map between parameters and K_tube_posterior_intercostal_T7_R_module for
    vars E_K_tube_posterior_intercostal_T7_R and E;
    vars K_m_K_tube_posterior_intercostal_T7_R and K_m;
  enddef;
  def map between parameters and K_tube_thoracic_aorta_IV_module for
    vars E_K_tube_thoracic_aorta_IV and E;
    vars K_m_K_tube_thoracic_aorta_IV and K_m;
  enddef;
  def map between parameters and K_tube_posterior_intercostal_T7_L_module for
    vars E_K_tube_posterior_intercostal_T7_L and E;
    vars K_m_K_tube_posterior_intercostal_T7_L and K_m;
  enddef;
  def map between parameters and K_tube_thoracic_aorta_V_module for
    vars E_K_tube_thoracic_aorta_V and E;
    vars K_m_K_tube_thoracic_aorta_V and K_m;
  enddef;
  def map between parameters and K_tube_thoracic_aorta_VI_module for
    vars E_K_tube_thoracic_aorta_VI and E;
    vars K_m_K_tube_thoracic_aorta_VI and K_m;
  enddef;
  def map between parameters and K_tube_celiac_trunk_module for
    vars E_K_tube_celiac_trunk and E;
    vars K_m_K_tube_celiac_trunk and K_m;
  enddef;
  def map between parameters and K_tube_abdominal_aorta_I_module for
    vars E_K_tube_abdominal_aorta_I and E;
    vars K_m_K_tube_abdominal_aorta_I and K_m;
  enddef;
  def map between parameters and K_tube_common_hepatic_module for
    vars E_K_tube_common_hepatic and E;
    vars K_m_K_tube_common_hepatic and K_m;
  enddef;
  def map between parameters and K_tube_splenic_I_module for
    vars E_K_tube_splenic_I and E;
    vars K_m_K_tube_splenic_I and K_m;
  enddef;
  def map between parameters and K_tube_left_gastric_module for
    vars E_K_tube_left_gastric and E;
    vars K_m_K_tube_left_gastric and K_m;
  enddef;
  def map between parameters and K_tube_splenic_II_module for
    vars E_K_tube_splenic_II and E;
    vars K_m_K_tube_splenic_II and K_m;
  enddef;
  def map between parameters and K_tube_superior_mesenteric_module for
    vars E_K_tube_superior_mesenteric and E;
    vars K_m_K_tube_superior_mesenteric and K_m;
  enddef;
  def map between parameters and K_tube_abdominal_aorta_II_module for
    vars E_K_tube_abdominal_aorta_II and E;
    vars K_m_K_tube_abdominal_aorta_II and K_m;
  enddef;
  def map between parameters and K_tube_renal_L_module for
    vars E_K_tube_renal_L and E;
    vars K_m_K_tube_renal_L and K_m;
  enddef;
  def map between parameters and K_tube_abdominal_aorta_III_module for
    vars E_K_tube_abdominal_aorta_III and E;
    vars K_m_K_tube_abdominal_aorta_III and K_m;
  enddef;
  def map between parameters and K_tube_renal_R_module for
    vars E_K_tube_renal_R and E;
    vars K_m_K_tube_renal_R and K_m;
  enddef;
  def map between parameters and K_tube_abdominal_aorta_IV_module for
    vars E_K_tube_abdominal_aorta_IV and E;
    vars K_m_K_tube_abdominal_aorta_IV and K_m;
  enddef;
  def map between parameters and K_tube_inferior_mesenteric_module for
    vars E_K_tube_inferior_mesenteric and E;
    vars K_m_K_tube_inferior_mesenteric and K_m;
  enddef;
  def map between parameters and K_tube_abdominal_aorta_V_module for
    vars E_K_tube_abdominal_aorta_V and E;
    vars K_m_K_tube_abdominal_aorta_V and K_m;
  enddef;
  def map between parameters and K_tube_common_iliac_R_module for
    vars E_K_tube_common_iliac_R and E;
    vars K_m_K_tube_common_iliac_R and K_m;
  enddef;
  def map between parameters and K_tube_common_iliac_L_module for
    vars E_K_tube_common_iliac_L and E;
    vars K_m_K_tube_common_iliac_L and K_m;
  enddef;
  def map between parameters and K_tube_external_iliac_R_module for
    vars E_K_tube_external_iliac_R and E;
    vars K_m_K_tube_external_iliac_R and K_m;
  enddef;
  def map between parameters and K_tube_internal_iliac_R_module for
    vars E_K_tube_internal_iliac_R and E;
    vars K_m_K_tube_internal_iliac_R and K_m;
  enddef;
  def map between parameters and K_tube_femoral_R_I_module for
    vars E_K_tube_femoral_R_I and E;
    vars K_m_K_tube_femoral_R_I and K_m;
  enddef;
  def map between parameters and K_tube_profunda_femoris_R_module for
    vars E_K_tube_profunda_femoris_R and E;
    vars K_m_K_tube_profunda_femoris_R and K_m;
  enddef;
  def map between parameters and K_tube_femoral_R_II_module for
    vars E_K_tube_femoral_R_II and E;
    vars K_m_K_tube_femoral_R_II and K_m;
  enddef;
  def map between parameters and K_tube_popliteal_R_I_module for
    vars E_K_tube_popliteal_R_I and E;
    vars K_m_K_tube_popliteal_R_I and K_m;
  enddef;
  def map between parameters and K_tube_anterior_tibial_R_module for
    vars E_K_tube_anterior_tibial_R and E;
    vars K_m_K_tube_anterior_tibial_R and K_m;
  enddef;
  def map between parameters and K_tube_popliteal_R_II_module for
    vars E_K_tube_popliteal_R_II and E;
    vars K_m_K_tube_popliteal_R_II and K_m;
  enddef;
  def map between parameters and K_tube_tibiofibular_trunk_R_module for
    vars E_K_tube_tibiofibular_trunk_R and E;
    vars K_m_K_tube_tibiofibular_trunk_R and K_m;
  enddef;
  def map between parameters and K_tube_posterior_tibial_R_module for
    vars E_K_tube_posterior_tibial_R and E;
    vars K_m_K_tube_posterior_tibial_R and K_m;
  enddef;
  def map between parameters and K_tube_external_iliac_L_module for
    vars E_K_tube_external_iliac_L and E;
    vars K_m_K_tube_external_iliac_L and K_m;
  enddef;
  def map between parameters and K_tube_internal_iliac_L_module for
    vars E_K_tube_internal_iliac_L and E;
    vars K_m_K_tube_internal_iliac_L and K_m;
  enddef;
  def map between parameters and K_tube_femoral_L_I_module for
    vars E_K_tube_femoral_L_I and E;
    vars K_m_K_tube_femoral_L_I and K_m;
  enddef;
  def map between parameters and K_tube_profunda_femoris_L_module for
    vars E_K_tube_profunda_femoris_L and E;
    vars K_m_K_tube_profunda_femoris_L and K_m;
  enddef;
  def map between parameters and K_tube_femoral_L_II_module for
    vars E_K_tube_femoral_L_II and E;
    vars K_m_K_tube_femoral_L_II and K_m;
  enddef;
  def map between parameters and K_tube_popliteal_L_I_module for
    vars E_K_tube_popliteal_L_I and E;
    vars K_m_K_tube_popliteal_L_I and K_m;
  enddef;
  def map between parameters and K_tube_anterior_tibial_L_module for
    vars E_K_tube_anterior_tibial_L and E;
    vars K_m_K_tube_anterior_tibial_L and K_m;
  enddef;
  def map between parameters and K_tube_popliteal_L_II_module for
    vars E_K_tube_popliteal_L_II and E;
    vars K_m_K_tube_popliteal_L_II and K_m;
  enddef;
  def map between parameters and K_tube_tibiofibular_trunk_L_module for
    vars E_K_tube_tibiofibular_trunk_L and E;
    vars K_m_K_tube_tibiofibular_trunk_L and K_m;
  enddef;
  def map between parameters and K_tube_posterior_tibial_L_module for
    vars E_K_tube_posterior_tibial_L and E;
    vars K_m_K_tube_posterior_tibial_L and K_m;
  enddef;
  def map between parameters_global and global for
    vars T and T;
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and input_flow_aorticroot_module for
    vars T and T;
  enddef;
  def map between parameters_global and aortic_arch_I_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters_global and brachiocephalic_trunk_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters_global and aortic_arch_II_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters_global and subclavian_R_I_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters_global and common_carotid_R_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters_global and vertebral_R_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters_global and subclavian_R_II_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters_global and axillary_R_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters_global and brachial_R_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters_global and radial_R_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters_global and ulnar_R_I_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters_global and common_interosseous_R_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters_global and ulnar_R_II_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters_global and posterior_interosseous_R_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters_global and external_carotid_R_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters_global and internal_carotid_R_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters_global and common_carotid_L_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters_global and aortic_arch_III_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters_global and external_carotid_L_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters_global and internal_carotid_L_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters_global and subclavian_L_I_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters_global and aortic_arch_IV_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters_global and vertebral_L_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters_global and subclavian_L_II_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters_global and axillary_L_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters_global and brachial_L_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters_global and radial_L_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters_global and ulnar_L_I_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters_global and common_interosseous_L_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters_global and ulnar_L_II_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters_global and posterior_interosseous_L_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters_global and thoracic_aorta_I_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters_global and posterior_intercostal_T6_R_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters_global and thoracic_aorta_II_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters_global and posterior_intercostal_T6_L_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters_global and thoracic_aorta_III_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters_global and posterior_intercostal_T7_R_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters_global and thoracic_aorta_IV_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters_global and posterior_intercostal_T7_L_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters_global and thoracic_aorta_V_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters_global and thoracic_aorta_VI_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters_global and celiac_trunk_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters_global and abdominal_aorta_I_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters_global and common_hepatic_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters_global and splenic_I_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters_global and left_gastric_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters_global and splenic_II_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters_global and superior_mesenteric_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters_global and abdominal_aorta_II_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters_global and renal_L_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters_global and abdominal_aorta_III_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters_global and renal_R_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters_global and abdominal_aorta_IV_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters_global and inferior_mesenteric_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters_global and abdominal_aorta_V_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters_global and common_iliac_R_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters_global and common_iliac_L_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters_global and external_iliac_R_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters_global and internal_iliac_R_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters_global and femoral_R_I_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters_global and profunda_femoris_R_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters_global and femoral_R_II_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters_global and popliteal_R_I_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters_global and anterior_tibial_R_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters_global and popliteal_R_II_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters_global and tibiofibular_trunk_R_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters_global and posterior_tibial_R_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters_global and external_iliac_L_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters_global and internal_iliac_L_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters_global and femoral_L_I_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters_global and profunda_femoris_L_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters_global and femoral_L_II_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters_global and popliteal_L_I_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters_global and anterior_tibial_L_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters_global and popliteal_L_II_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters_global and tibiofibular_trunk_L_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters_global and posterior_tibial_L_module for
    vars mu and mu;
    vars rho and rho;
    vars g and g;
    vars beta_g and beta_g;
    vars R_flag and R_flag;
  enddef;
  def map between parameters_global and K_tube_aortic_arch_I_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and K_tube_brachiocephalic_trunk_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and K_tube_aortic_arch_II_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and K_tube_subclavian_R_I_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and K_tube_common_carotid_R_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and K_tube_vertebral_R_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and K_tube_subclavian_R_II_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and K_tube_axillary_R_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and K_tube_brachial_R_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and K_tube_radial_R_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and K_tube_ulnar_R_I_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and K_tube_common_interosseous_R_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and K_tube_ulnar_R_II_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and K_tube_posterior_interosseous_R_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and K_tube_external_carotid_R_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and K_tube_internal_carotid_R_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and K_tube_common_carotid_L_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and K_tube_aortic_arch_III_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and K_tube_external_carotid_L_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and K_tube_internal_carotid_L_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and K_tube_subclavian_L_I_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and K_tube_aortic_arch_IV_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and K_tube_vertebral_L_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and K_tube_subclavian_L_II_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and K_tube_axillary_L_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and K_tube_brachial_L_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and K_tube_radial_L_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and K_tube_ulnar_L_I_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and K_tube_common_interosseous_L_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and K_tube_ulnar_L_II_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and K_tube_posterior_interosseous_L_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and K_tube_thoracic_aorta_I_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and K_tube_posterior_intercostal_T6_R_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and K_tube_thoracic_aorta_II_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and K_tube_posterior_intercostal_T6_L_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and K_tube_thoracic_aorta_III_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and K_tube_posterior_intercostal_T7_R_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and K_tube_thoracic_aorta_IV_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and K_tube_posterior_intercostal_T7_L_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and K_tube_thoracic_aorta_V_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and K_tube_thoracic_aorta_VI_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and K_tube_celiac_trunk_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and K_tube_abdominal_aorta_I_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and K_tube_common_hepatic_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and K_tube_splenic_I_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and K_tube_left_gastric_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and K_tube_splenic_II_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and K_tube_superior_mesenteric_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and K_tube_abdominal_aorta_II_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and K_tube_renal_L_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and K_tube_abdominal_aorta_III_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and K_tube_renal_R_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and K_tube_abdominal_aorta_IV_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and K_tube_inferior_mesenteric_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and K_tube_abdominal_aorta_V_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and K_tube_common_iliac_R_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and K_tube_common_iliac_L_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and K_tube_external_iliac_R_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and K_tube_internal_iliac_R_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and K_tube_femoral_R_I_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and K_tube_profunda_femoris_R_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and K_tube_femoral_R_II_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and K_tube_popliteal_R_I_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and K_tube_anterior_tibial_R_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and K_tube_popliteal_R_II_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and K_tube_tibiofibular_trunk_R_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and K_tube_posterior_tibial_R_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and K_tube_external_iliac_L_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and K_tube_internal_iliac_L_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and K_tube_femoral_L_I_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and K_tube_profunda_femoris_L_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and K_tube_femoral_L_II_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and K_tube_popliteal_L_I_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and K_tube_anterior_tibial_L_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and K_tube_popliteal_L_II_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and K_tube_tibiofibular_trunk_L_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and K_tube_posterior_tibial_L_module for
    vars nu and nu;
    vars SMvolfrac_art and SMvolfrac_art;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between environment and input_flow_aorticroot_module for
    vars time and t;
  enddef;
  def map between environment and aortic_arch_I_module for
    vars time and t;
  enddef;
  def map between environment and brachiocephalic_trunk_module for
    vars time and t;
  enddef;
  def map between environment and aortic_arch_II_module for
    vars time and t;
  enddef;
  def map between environment and subclavian_R_I_module for
    vars time and t;
  enddef;
  def map between environment and common_carotid_R_module for
    vars time and t;
  enddef;
  def map between environment and vertebral_R_module for
    vars time and t;
  enddef;
  def map between environment and subclavian_R_II_module for
    vars time and t;
  enddef;
  def map between environment and axillary_R_module for
    vars time and t;
  enddef;
  def map between environment and brachial_R_module for
    vars time and t;
  enddef;
  def map between environment and radial_R_module for
    vars time and t;
  enddef;
  def map between environment and ulnar_R_I_module for
    vars time and t;
  enddef;
  def map between environment and common_interosseous_R_module for
    vars time and t;
  enddef;
  def map between environment and ulnar_R_II_module for
    vars time and t;
  enddef;
  def map between environment and posterior_interosseous_R_module for
    vars time and t;
  enddef;
  def map between environment and external_carotid_R_module for
    vars time and t;
  enddef;
  def map between environment and internal_carotid_R_module for
    vars time and t;
  enddef;
  def map between environment and common_carotid_L_module for
    vars time and t;
  enddef;
  def map between environment and aortic_arch_III_module for
    vars time and t;
  enddef;
  def map between environment and external_carotid_L_module for
    vars time and t;
  enddef;
  def map between environment and internal_carotid_L_module for
    vars time and t;
  enddef;
  def map between environment and subclavian_L_I_module for
    vars time and t;
  enddef;
  def map between environment and aortic_arch_IV_module for
    vars time and t;
  enddef;
  def map between environment and vertebral_L_module for
    vars time and t;
  enddef;
  def map between environment and subclavian_L_II_module for
    vars time and t;
  enddef;
  def map between environment and axillary_L_module for
    vars time and t;
  enddef;
  def map between environment and brachial_L_module for
    vars time and t;
  enddef;
  def map between environment and radial_L_module for
    vars time and t;
  enddef;
  def map between environment and ulnar_L_I_module for
    vars time and t;
  enddef;
  def map between environment and common_interosseous_L_module for
    vars time and t;
  enddef;
  def map between environment and ulnar_L_II_module for
    vars time and t;
  enddef;
  def map between environment and posterior_interosseous_L_module for
    vars time and t;
  enddef;
  def map between environment and thoracic_aorta_I_module for
    vars time and t;
  enddef;
  def map between environment and posterior_intercostal_T6_R_module for
    vars time and t;
  enddef;
  def map between environment and thoracic_aorta_II_module for
    vars time and t;
  enddef;
  def map between environment and posterior_intercostal_T6_L_module for
    vars time and t;
  enddef;
  def map between environment and thoracic_aorta_III_module for
    vars time and t;
  enddef;
  def map between environment and posterior_intercostal_T7_R_module for
    vars time and t;
  enddef;
  def map between environment and thoracic_aorta_IV_module for
    vars time and t;
  enddef;
  def map between environment and posterior_intercostal_T7_L_module for
    vars time and t;
  enddef;
  def map between environment and thoracic_aorta_V_module for
    vars time and t;
  enddef;
  def map between environment and thoracic_aorta_VI_module for
    vars time and t;
  enddef;
  def map between environment and celiac_trunk_module for
    vars time and t;
  enddef;
  def map between environment and abdominal_aorta_I_module for
    vars time and t;
  enddef;
  def map between environment and common_hepatic_module for
    vars time and t;
  enddef;
  def map between environment and splenic_I_module for
    vars time and t;
  enddef;
  def map between environment and left_gastric_module for
    vars time and t;
  enddef;
  def map between environment and splenic_II_module for
    vars time and t;
  enddef;
  def map between environment and superior_mesenteric_module for
    vars time and t;
  enddef;
  def map between environment and abdominal_aorta_II_module for
    vars time and t;
  enddef;
  def map between environment and renal_L_module for
    vars time and t;
  enddef;
  def map between environment and abdominal_aorta_III_module for
    vars time and t;
  enddef;
  def map between environment and renal_R_module for
    vars time and t;
  enddef;
  def map between environment and abdominal_aorta_IV_module for
    vars time and t;
  enddef;
  def map between environment and inferior_mesenteric_module for
    vars time and t;
  enddef;
  def map between environment and abdominal_aorta_V_module for
    vars time and t;
  enddef;
  def map between environment and common_iliac_R_module for
    vars time and t;
  enddef;
  def map between environment and common_iliac_L_module for
    vars time and t;
  enddef;
  def map between environment and external_iliac_R_module for
    vars time and t;
  enddef;
  def map between environment and internal_iliac_R_module for
    vars time and t;
  enddef;
  def map between environment and femoral_R_I_module for
    vars time and t;
  enddef;
  def map between environment and profunda_femoris_R_module for
    vars time and t;
  enddef;
  def map between environment and femoral_R_II_module for
    vars time and t;
  enddef;
  def map between environment and popliteal_R_I_module for
    vars time and t;
  enddef;
  def map between environment and anterior_tibial_R_module for
    vars time and t;
  enddef;
  def map between environment and popliteal_R_II_module for
    vars time and t;
  enddef;
  def map between environment and tibiofibular_trunk_R_module for
    vars time and t;
  enddef;
  def map between environment and posterior_tibial_R_module for
    vars time and t;
  enddef;
  def map between environment and external_iliac_L_module for
    vars time and t;
  enddef;
  def map between environment and internal_iliac_L_module for
    vars time and t;
  enddef;
  def map between environment and femoral_L_I_module for
    vars time and t;
  enddef;
  def map between environment and profunda_femoris_L_module for
    vars time and t;
  enddef;
  def map between environment and femoral_L_II_module for
    vars time and t;
  enddef;
  def map between environment and popliteal_L_I_module for
    vars time and t;
  enddef;
  def map between environment and anterior_tibial_L_module for
    vars time and t;
  enddef;
  def map between environment and popliteal_L_II_module for
    vars time and t;
  enddef;
  def map between environment and tibiofibular_trunk_L_module for
    vars time and t;
  enddef;
  def map between environment and posterior_tibial_L_module for
    vars time and t;
  enddef;
  def map between environment and external_carotid_R_T_module for
    vars time and t;
  enddef;
  def map between environment and internal_carotid_R_T_module for
    vars time and t;
  enddef;
  def map between environment and vertebral_R_T_module for
    vars time and t;
  enddef;
  def map between environment and radial_R_T_module for
    vars time and t;
  enddef;
  def map between environment and posterior_interosseous_R_T_module for
    vars time and t;
  enddef;
  def map between environment and ulnar_R_II_T_module for
    vars time and t;
  enddef;
  def map between environment and external_carotid_L_T_module for
    vars time and t;
  enddef;
  def map between environment and internal_carotid_L_T_module for
    vars time and t;
  enddef;
  def map between environment and vertebral_L_T_module for
    vars time and t;
  enddef;
  def map between environment and radial_L_T_module for
    vars time and t;
  enddef;
  def map between environment and posterior_interosseous_L_T_module for
    vars time and t;
  enddef;
  def map between environment and ulnar_L_II_T_module for
    vars time and t;
  enddef;
  def map between environment and posterior_intercostal_T6_R_T_module for
    vars time and t;
  enddef;
  def map between environment and posterior_intercostal_T6_L_T_module for
    vars time and t;
  enddef;
  def map between environment and posterior_intercostal_T7_R_T_module for
    vars time and t;
  enddef;
  def map between environment and posterior_intercostal_T7_L_T_module for
    vars time and t;
  enddef;
  def map between environment and common_hepatic_T_module for
    vars time and t;
  enddef;
  def map between environment and left_gastric_T_module for
    vars time and t;
  enddef;
  def map between environment and splenic_II_T_module for
    vars time and t;
  enddef;
  def map between environment and superior_mesenteric_T_module for
    vars time and t;
  enddef;
  def map between environment and renal_L_T_module for
    vars time and t;
  enddef;
  def map between environment and renal_R_T_module for
    vars time and t;
  enddef;
  def map between environment and inferior_mesenteric_T_module for
    vars time and t;
  enddef;
  def map between environment and internal_iliac_R_T_module for
    vars time and t;
  enddef;
  def map between environment and profunda_femoris_R_T_module for
    vars time and t;
  enddef;
  def map between environment and anterior_tibial_R_T_module for
    vars time and t;
  enddef;
  def map between environment and posterior_tibial_R_T_module for
    vars time and t;
  enddef;
  def map between environment and internal_iliac_L_T_module for
    vars time and t;
  enddef;
  def map between environment and profunda_femoris_L_T_module for
    vars time and t;
  enddef;
  def map between environment and anterior_tibial_L_T_module for
    vars time and t;
  enddef;
  def map between environment and posterior_tibial_L_T_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_aortic_arch_I_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_brachiocephalic_trunk_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_aortic_arch_II_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_subclavian_R_I_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_common_carotid_R_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_vertebral_R_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_subclavian_R_II_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_axillary_R_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_brachial_R_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_radial_R_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_ulnar_R_I_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_common_interosseous_R_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_ulnar_R_II_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_posterior_interosseous_R_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_external_carotid_R_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_internal_carotid_R_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_common_carotid_L_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_aortic_arch_III_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_external_carotid_L_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_internal_carotid_L_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_subclavian_L_I_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_aortic_arch_IV_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_vertebral_L_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_subclavian_L_II_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_axillary_L_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_brachial_L_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_radial_L_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_ulnar_L_I_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_common_interosseous_L_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_ulnar_L_II_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_posterior_interosseous_L_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_thoracic_aorta_I_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_posterior_intercostal_T6_R_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_thoracic_aorta_II_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_posterior_intercostal_T6_L_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_thoracic_aorta_III_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_posterior_intercostal_T7_R_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_thoracic_aorta_IV_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_posterior_intercostal_T7_L_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_thoracic_aorta_V_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_thoracic_aorta_VI_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_celiac_trunk_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_abdominal_aorta_I_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_common_hepatic_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_splenic_I_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_left_gastric_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_splenic_II_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_superior_mesenteric_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_abdominal_aorta_II_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_renal_L_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_abdominal_aorta_III_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_renal_R_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_abdominal_aorta_IV_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_inferior_mesenteric_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_abdominal_aorta_V_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_common_iliac_R_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_common_iliac_L_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_external_iliac_R_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_internal_iliac_R_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_femoral_R_I_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_profunda_femoris_R_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_femoral_R_II_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_popliteal_R_I_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_anterior_tibial_R_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_popliteal_R_II_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_tibiofibular_trunk_R_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_posterior_tibial_R_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_external_iliac_L_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_internal_iliac_L_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_femoral_L_I_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_profunda_femoris_L_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_femoral_L_II_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_popliteal_L_I_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_anterior_tibial_L_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_popliteal_L_II_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_tibiofibular_trunk_L_module for
    vars time and t;
  enddef;
  def map between environment and K_tube_posterior_tibial_L_module for
    vars time and t;
  enddef;
  def map between input_flow_aorticroot_module and input_flow_aorticroot for
    vars T and T;
    vars v and v;
  enddef;
  def map between input_flow_aorticroot_module and aortic_arch_I_module for
    vars v and v_in;
    vars P and u;
  enddef;
  def map between aortic_arch_I_module and aortic_arch_I for
    vars beta_g and beta_g;
    vars theta and theta;
    vars l and l;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars u_ext and u_ext;
    vars u and u;
    vars v and v;
    vars u_d and u_d;
    vars q_C and q_C;
    vars q_C_d and q_C_d;
    vars q and q;
    vars q_p and q_p;
    vars q_d and q_d;
    vars q_0_2 and q_0_2;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between aortic_arch_I_module and K_tube_aortic_arch_I_module for
    vars l and l;
    vars r_0 and r_0;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between aortic_arch_I_module and brachiocephalic_trunk_module for
    vars u_d and u_in;
  enddef;
  def map between aortic_arch_I_module and aortic_arch_II_module for
    vars u_d and u_in;
  enddef;
  def map between aortic_arch_I_module and generic_junction_connection for
    vars v_out_sum and v_aortic_arch_I_sum_Nout;
  enddef;
  def map between brachiocephalic_trunk_module and brachiocephalic_trunk for
    vars beta_g and beta_g;
    vars theta and theta;
    vars l and l;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars du_dt and du_dt;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between brachiocephalic_trunk_module and K_tube_brachiocephalic_trunk_module for
    vars l and l;
    vars r_0 and r_0;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between brachiocephalic_trunk_module and generic_junction_connection for
    vars v and v_brachiocephalic_trunk_Nout;
    vars v_out_sum and v_brachiocephalic_trunk_sum_Nout;
  enddef;
  def map between brachiocephalic_trunk_module and subclavian_R_I_module for
    vars u and u_in;
  enddef;
  def map between brachiocephalic_trunk_module and common_carotid_R_module for
    vars u and u_in;
  enddef;
  def map between aortic_arch_II_module and aortic_arch_II for
    vars beta_g and beta_g;
    vars theta and theta;
    vars l and l;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars du_dt and du_dt;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between aortic_arch_II_module and K_tube_aortic_arch_II_module for
    vars l and l;
    vars r_0 and r_0;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between aortic_arch_II_module and generic_junction_connection for
    vars v and v_aortic_arch_II_Nout;
    vars v_out_sum and v_aortic_arch_II_sum_Nout;
  enddef;
  def map between aortic_arch_II_module and common_carotid_L_module for
    vars u and u_in;
  enddef;
  def map between aortic_arch_II_module and aortic_arch_III_module for
    vars u and u_in;
  enddef;
  def map between subclavian_R_I_module and subclavian_R_I for
    vars beta_g and beta_g;
    vars theta and theta;
    vars l and l;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars du_dt and du_dt;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between subclavian_R_I_module and K_tube_subclavian_R_I_module for
    vars l and l;
    vars r_0 and r_0;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between subclavian_R_I_module and generic_junction_connection for
    vars v and v_subclavian_R_I_Nout;
    vars v_out_sum and v_subclavian_R_I_sum_Nout;
  enddef;
  def map between subclavian_R_I_module and vertebral_R_module for
    vars u and u_in;
  enddef;
  def map between subclavian_R_I_module and subclavian_R_II_module for
    vars u and u_in;
  enddef;
  def map between common_carotid_R_module and common_carotid_R for
    vars beta_g and beta_g;
    vars theta and theta;
    vars l and l;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars du_dt and du_dt;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between common_carotid_R_module and K_tube_common_carotid_R_module for
    vars l and l;
    vars r_0 and r_0;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between common_carotid_R_module and generic_junction_connection for
    vars v and v_common_carotid_R_Nout;
    vars v_out_sum and v_common_carotid_R_sum_Nout;
  enddef;
  def map between common_carotid_R_module and external_carotid_R_module for
    vars u and u_in;
  enddef;
  def map between common_carotid_R_module and internal_carotid_R_module for
    vars u and u_in;
  enddef;
  def map between vertebral_R_module and vertebral_R for
    vars beta_g and beta_g;
    vars theta and theta;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between vertebral_R_module and K_tube_vertebral_R_module for
    vars l and l;
    vars r_0 and r_0;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between vertebral_R_module and generic_junction_connection for
    vars v and v_vertebral_R_Nout;
  enddef;
  def map between vertebral_R_module and vertebral_R_T_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between subclavian_R_II_module and subclavian_R_II for
    vars beta_g and beta_g;
    vars theta and theta;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between subclavian_R_II_module and K_tube_subclavian_R_II_module for
    vars l and l;
    vars r_0 and r_0;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between subclavian_R_II_module and generic_junction_connection for
    vars v and v_subclavian_R_II_Nout;
  enddef;
  def map between subclavian_R_II_module and axillary_R_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between axillary_R_module and axillary_R for
    vars beta_g and beta_g;
    vars theta and theta;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between axillary_R_module and K_tube_axillary_R_module for
    vars l and l;
    vars r_0 and r_0;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between axillary_R_module and brachial_R_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between brachial_R_module and brachial_R for
    vars beta_g and beta_g;
    vars theta and theta;
    vars l and l;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars du_dt and du_dt;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between brachial_R_module and K_tube_brachial_R_module for
    vars l and l;
    vars r_0 and r_0;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between brachial_R_module and radial_R_module for
    vars u and u_in;
  enddef;
  def map between brachial_R_module and ulnar_R_I_module for
    vars u and u_in;
  enddef;
  def map between brachial_R_module and generic_junction_connection for
    vars v_out_sum and v_brachial_R_sum_Nout;
  enddef;
  def map between radial_R_module and radial_R for
    vars beta_g and beta_g;
    vars theta and theta;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between radial_R_module and K_tube_radial_R_module for
    vars l and l;
    vars r_0 and r_0;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between radial_R_module and generic_junction_connection for
    vars v and v_radial_R_Nout;
  enddef;
  def map between radial_R_module and radial_R_T_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between ulnar_R_I_module and ulnar_R_I for
    vars beta_g and beta_g;
    vars theta and theta;
    vars l and l;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars du_dt and du_dt;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between ulnar_R_I_module and K_tube_ulnar_R_I_module for
    vars l and l;
    vars r_0 and r_0;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between ulnar_R_I_module and generic_junction_connection for
    vars v and v_ulnar_R_I_Nout;
    vars v_out_sum and v_ulnar_R_I_sum_Nout;
  enddef;
  def map between ulnar_R_I_module and common_interosseous_R_module for
    vars u and u_in;
  enddef;
  def map between ulnar_R_I_module and ulnar_R_II_module for
    vars u and u_in;
  enddef;
  def map between common_interosseous_R_module and common_interosseous_R for
    vars beta_g and beta_g;
    vars theta and theta;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between common_interosseous_R_module and K_tube_common_interosseous_R_module for
    vars l and l;
    vars r_0 and r_0;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between common_interosseous_R_module and generic_junction_connection for
    vars v and v_common_interosseous_R_Nout;
  enddef;
  def map between common_interosseous_R_module and posterior_interosseous_R_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between ulnar_R_II_module and ulnar_R_II for
    vars beta_g and beta_g;
    vars theta and theta;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between ulnar_R_II_module and K_tube_ulnar_R_II_module for
    vars l and l;
    vars r_0 and r_0;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between ulnar_R_II_module and generic_junction_connection for
    vars v and v_ulnar_R_II_Nout;
  enddef;
  def map between ulnar_R_II_module and ulnar_R_II_T_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between posterior_interosseous_R_module and posterior_interosseous_R for
    vars beta_g and beta_g;
    vars theta and theta;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between posterior_interosseous_R_module and K_tube_posterior_interosseous_R_module for
    vars l and l;
    vars r_0 and r_0;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between posterior_interosseous_R_module and posterior_interosseous_R_T_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between external_carotid_R_module and external_carotid_R for
    vars beta_g and beta_g;
    vars theta and theta;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between external_carotid_R_module and K_tube_external_carotid_R_module for
    vars l and l;
    vars r_0 and r_0;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between external_carotid_R_module and generic_junction_connection for
    vars v and v_external_carotid_R_Nout;
  enddef;
  def map between external_carotid_R_module and external_carotid_R_T_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between internal_carotid_R_module and internal_carotid_R for
    vars beta_g and beta_g;
    vars theta and theta;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between internal_carotid_R_module and K_tube_internal_carotid_R_module for
    vars l and l;
    vars r_0 and r_0;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between internal_carotid_R_module and generic_junction_connection for
    vars v and v_internal_carotid_R_Nout;
  enddef;
  def map between internal_carotid_R_module and internal_carotid_R_T_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between common_carotid_L_module and common_carotid_L for
    vars beta_g and beta_g;
    vars theta and theta;
    vars l and l;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars du_dt and du_dt;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between common_carotid_L_module and K_tube_common_carotid_L_module for
    vars l and l;
    vars r_0 and r_0;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between common_carotid_L_module and generic_junction_connection for
    vars v and v_common_carotid_L_Nout;
    vars v_out_sum and v_common_carotid_L_sum_Nout;
  enddef;
  def map between common_carotid_L_module and external_carotid_L_module for
    vars u and u_in;
  enddef;
  def map between common_carotid_L_module and internal_carotid_L_module for
    vars u and u_in;
  enddef;
  def map between aortic_arch_III_module and aortic_arch_III for
    vars beta_g and beta_g;
    vars theta and theta;
    vars l and l;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars du_dt and du_dt;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between aortic_arch_III_module and K_tube_aortic_arch_III_module for
    vars l and l;
    vars r_0 and r_0;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between aortic_arch_III_module and generic_junction_connection for
    vars v and v_aortic_arch_III_Nout;
    vars v_out_sum and v_aortic_arch_III_sum_Nout;
  enddef;
  def map between aortic_arch_III_module and subclavian_L_I_module for
    vars u and u_in;
  enddef;
  def map between aortic_arch_III_module and aortic_arch_IV_module for
    vars u and u_in;
  enddef;
  def map between external_carotid_L_module and external_carotid_L for
    vars beta_g and beta_g;
    vars theta and theta;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between external_carotid_L_module and K_tube_external_carotid_L_module for
    vars l and l;
    vars r_0 and r_0;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between external_carotid_L_module and generic_junction_connection for
    vars v and v_external_carotid_L_Nout;
  enddef;
  def map between external_carotid_L_module and external_carotid_L_T_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between internal_carotid_L_module and internal_carotid_L for
    vars beta_g and beta_g;
    vars theta and theta;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between internal_carotid_L_module and K_tube_internal_carotid_L_module for
    vars l and l;
    vars r_0 and r_0;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between internal_carotid_L_module and generic_junction_connection for
    vars v and v_internal_carotid_L_Nout;
  enddef;
  def map between internal_carotid_L_module and internal_carotid_L_T_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between subclavian_L_I_module and subclavian_L_I for
    vars beta_g and beta_g;
    vars theta and theta;
    vars l and l;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars du_dt and du_dt;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between subclavian_L_I_module and K_tube_subclavian_L_I_module for
    vars l and l;
    vars r_0 and r_0;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between subclavian_L_I_module and generic_junction_connection for
    vars v and v_subclavian_L_I_Nout;
    vars v_out_sum and v_subclavian_L_I_sum_Nout;
  enddef;
  def map between subclavian_L_I_module and vertebral_L_module for
    vars u and u_in;
  enddef;
  def map between subclavian_L_I_module and subclavian_L_II_module for
    vars u and u_in;
  enddef;
  def map between aortic_arch_IV_module and aortic_arch_IV for
    vars beta_g and beta_g;
    vars theta and theta;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between aortic_arch_IV_module and K_tube_aortic_arch_IV_module for
    vars l and l;
    vars r_0 and r_0;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between aortic_arch_IV_module and generic_junction_connection for
    vars v and v_aortic_arch_IV_Nout;
  enddef;
  def map between aortic_arch_IV_module and thoracic_aorta_I_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between vertebral_L_module and vertebral_L for
    vars beta_g and beta_g;
    vars theta and theta;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between vertebral_L_module and K_tube_vertebral_L_module for
    vars l and l;
    vars r_0 and r_0;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between vertebral_L_module and generic_junction_connection for
    vars v and v_vertebral_L_Nout;
  enddef;
  def map between vertebral_L_module and vertebral_L_T_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between subclavian_L_II_module and subclavian_L_II for
    vars beta_g and beta_g;
    vars theta and theta;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between subclavian_L_II_module and K_tube_subclavian_L_II_module for
    vars l and l;
    vars r_0 and r_0;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between subclavian_L_II_module and generic_junction_connection for
    vars v and v_subclavian_L_II_Nout;
  enddef;
  def map between subclavian_L_II_module and axillary_L_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between axillary_L_module and axillary_L for
    vars beta_g and beta_g;
    vars theta and theta;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between axillary_L_module and K_tube_axillary_L_module for
    vars l and l;
    vars r_0 and r_0;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between axillary_L_module and brachial_L_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between brachial_L_module and brachial_L for
    vars beta_g and beta_g;
    vars theta and theta;
    vars l and l;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars du_dt and du_dt;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between brachial_L_module and K_tube_brachial_L_module for
    vars l and l;
    vars r_0 and r_0;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between brachial_L_module and radial_L_module for
    vars u and u_in;
  enddef;
  def map between brachial_L_module and ulnar_L_I_module for
    vars u and u_in;
  enddef;
  def map between brachial_L_module and generic_junction_connection for
    vars v_out_sum and v_brachial_L_sum_Nout;
  enddef;
  def map between radial_L_module and radial_L for
    vars beta_g and beta_g;
    vars theta and theta;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between radial_L_module and K_tube_radial_L_module for
    vars l and l;
    vars r_0 and r_0;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between radial_L_module and generic_junction_connection for
    vars v and v_radial_L_Nout;
  enddef;
  def map between radial_L_module and radial_L_T_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between ulnar_L_I_module and ulnar_L_I for
    vars beta_g and beta_g;
    vars theta and theta;
    vars l and l;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars du_dt and du_dt;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between ulnar_L_I_module and K_tube_ulnar_L_I_module for
    vars l and l;
    vars r_0 and r_0;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between ulnar_L_I_module and generic_junction_connection for
    vars v and v_ulnar_L_I_Nout;
    vars v_out_sum and v_ulnar_L_I_sum_Nout;
  enddef;
  def map between ulnar_L_I_module and common_interosseous_L_module for
    vars u and u_in;
  enddef;
  def map between ulnar_L_I_module and ulnar_L_II_module for
    vars u and u_in;
  enddef;
  def map between common_interosseous_L_module and common_interosseous_L for
    vars beta_g and beta_g;
    vars theta and theta;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between common_interosseous_L_module and K_tube_common_interosseous_L_module for
    vars l and l;
    vars r_0 and r_0;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between common_interosseous_L_module and generic_junction_connection for
    vars v and v_common_interosseous_L_Nout;
  enddef;
  def map between common_interosseous_L_module and posterior_interosseous_L_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between ulnar_L_II_module and ulnar_L_II for
    vars beta_g and beta_g;
    vars theta and theta;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between ulnar_L_II_module and K_tube_ulnar_L_II_module for
    vars l and l;
    vars r_0 and r_0;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between ulnar_L_II_module and generic_junction_connection for
    vars v and v_ulnar_L_II_Nout;
  enddef;
  def map between ulnar_L_II_module and ulnar_L_II_T_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between posterior_interosseous_L_module and posterior_interosseous_L for
    vars beta_g and beta_g;
    vars theta and theta;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between posterior_interosseous_L_module and K_tube_posterior_interosseous_L_module for
    vars l and l;
    vars r_0 and r_0;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between posterior_interosseous_L_module and posterior_interosseous_L_T_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between thoracic_aorta_I_module and thoracic_aorta_I for
    vars beta_g and beta_g;
    vars theta and theta;
    vars l and l;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars du_dt and du_dt;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between thoracic_aorta_I_module and K_tube_thoracic_aorta_I_module for
    vars l and l;
    vars r_0 and r_0;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between thoracic_aorta_I_module and posterior_intercostal_T6_R_module for
    vars u and u_in;
  enddef;
  def map between thoracic_aorta_I_module and thoracic_aorta_II_module for
    vars u and u_in;
  enddef;
  def map between thoracic_aorta_I_module and generic_junction_connection for
    vars v_out_sum and v_thoracic_aorta_I_sum_Nout;
  enddef;
  def map between posterior_intercostal_T6_R_module and posterior_intercostal_T6_R for
    vars beta_g and beta_g;
    vars theta and theta;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between posterior_intercostal_T6_R_module and K_tube_posterior_intercostal_T6_R_module for
    vars l and l;
    vars r_0 and r_0;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between posterior_intercostal_T6_R_module and generic_junction_connection for
    vars v and v_posterior_intercostal_T6_R_Nout;
  enddef;
  def map between posterior_intercostal_T6_R_module and posterior_intercostal_T6_R_T_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between thoracic_aorta_II_module and thoracic_aorta_II for
    vars beta_g and beta_g;
    vars theta and theta;
    vars l and l;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars du_dt and du_dt;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between thoracic_aorta_II_module and K_tube_thoracic_aorta_II_module for
    vars l and l;
    vars r_0 and r_0;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between thoracic_aorta_II_module and generic_junction_connection for
    vars v and v_thoracic_aorta_II_Nout;
    vars v_out_sum and v_thoracic_aorta_II_sum_Nout;
  enddef;
  def map between thoracic_aorta_II_module and posterior_intercostal_T6_L_module for
    vars u and u_in;
  enddef;
  def map between thoracic_aorta_II_module and thoracic_aorta_III_module for
    vars u and u_in;
  enddef;
  def map between posterior_intercostal_T6_L_module and posterior_intercostal_T6_L for
    vars beta_g and beta_g;
    vars theta and theta;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between posterior_intercostal_T6_L_module and K_tube_posterior_intercostal_T6_L_module for
    vars l and l;
    vars r_0 and r_0;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between posterior_intercostal_T6_L_module and generic_junction_connection for
    vars v and v_posterior_intercostal_T6_L_Nout;
  enddef;
  def map between posterior_intercostal_T6_L_module and posterior_intercostal_T6_L_T_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between thoracic_aorta_III_module and thoracic_aorta_III for
    vars beta_g and beta_g;
    vars theta and theta;
    vars l and l;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars du_dt and du_dt;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between thoracic_aorta_III_module and K_tube_thoracic_aorta_III_module for
    vars l and l;
    vars r_0 and r_0;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between thoracic_aorta_III_module and generic_junction_connection for
    vars v and v_thoracic_aorta_III_Nout;
    vars v_out_sum and v_thoracic_aorta_III_sum_Nout;
  enddef;
  def map between thoracic_aorta_III_module and posterior_intercostal_T7_R_module for
    vars u and u_in;
  enddef;
  def map between thoracic_aorta_III_module and thoracic_aorta_IV_module for
    vars u and u_in;
  enddef;
  def map between posterior_intercostal_T7_R_module and posterior_intercostal_T7_R for
    vars beta_g and beta_g;
    vars theta and theta;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between posterior_intercostal_T7_R_module and K_tube_posterior_intercostal_T7_R_module for
    vars l and l;
    vars r_0 and r_0;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between posterior_intercostal_T7_R_module and generic_junction_connection for
    vars v and v_posterior_intercostal_T7_R_Nout;
  enddef;
  def map between posterior_intercostal_T7_R_module and posterior_intercostal_T7_R_T_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between thoracic_aorta_IV_module and thoracic_aorta_IV for
    vars beta_g and beta_g;
    vars theta and theta;
    vars l and l;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars du_dt and du_dt;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between thoracic_aorta_IV_module and K_tube_thoracic_aorta_IV_module for
    vars l and l;
    vars r_0 and r_0;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between thoracic_aorta_IV_module and generic_junction_connection for
    vars v and v_thoracic_aorta_IV_Nout;
    vars v_out_sum and v_thoracic_aorta_IV_sum_Nout;
  enddef;
  def map between thoracic_aorta_IV_module and posterior_intercostal_T7_L_module for
    vars u and u_in;
  enddef;
  def map between thoracic_aorta_IV_module and thoracic_aorta_V_module for
    vars u and u_in;
  enddef;
  def map between posterior_intercostal_T7_L_module and posterior_intercostal_T7_L for
    vars beta_g and beta_g;
    vars theta and theta;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between posterior_intercostal_T7_L_module and K_tube_posterior_intercostal_T7_L_module for
    vars l and l;
    vars r_0 and r_0;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between posterior_intercostal_T7_L_module and generic_junction_connection for
    vars v and v_posterior_intercostal_T7_L_Nout;
  enddef;
  def map between posterior_intercostal_T7_L_module and posterior_intercostal_T7_L_T_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between thoracic_aorta_V_module and thoracic_aorta_V for
    vars beta_g and beta_g;
    vars theta and theta;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between thoracic_aorta_V_module and K_tube_thoracic_aorta_V_module for
    vars l and l;
    vars r_0 and r_0;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between thoracic_aorta_V_module and generic_junction_connection for
    vars v and v_thoracic_aorta_V_Nout;
  enddef;
  def map between thoracic_aorta_V_module and thoracic_aorta_VI_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between thoracic_aorta_VI_module and thoracic_aorta_VI for
    vars beta_g and beta_g;
    vars theta and theta;
    vars l and l;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars du_dt and du_dt;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between thoracic_aorta_VI_module and K_tube_thoracic_aorta_VI_module for
    vars l and l;
    vars r_0 and r_0;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between thoracic_aorta_VI_module and celiac_trunk_module for
    vars u and u_in;
  enddef;
  def map between thoracic_aorta_VI_module and abdominal_aorta_I_module for
    vars u and u_in;
  enddef;
  def map between thoracic_aorta_VI_module and generic_junction_connection for
    vars v_out_sum and v_thoracic_aorta_VI_sum_Nout;
  enddef;
  def map between celiac_trunk_module and celiac_trunk for
    vars beta_g and beta_g;
    vars theta and theta;
    vars l and l;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars du_dt and du_dt;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between celiac_trunk_module and K_tube_celiac_trunk_module for
    vars l and l;
    vars r_0 and r_0;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between celiac_trunk_module and generic_junction_connection for
    vars v and v_celiac_trunk_Nout;
    vars v_out_sum and v_celiac_trunk_sum_Nout;
  enddef;
  def map between celiac_trunk_module and common_hepatic_module for
    vars u and u_in;
  enddef;
  def map between celiac_trunk_module and splenic_I_module for
    vars u and u_in;
  enddef;
  def map between abdominal_aorta_I_module and abdominal_aorta_I for
    vars beta_g and beta_g;
    vars theta and theta;
    vars l and l;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars du_dt and du_dt;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between abdominal_aorta_I_module and K_tube_abdominal_aorta_I_module for
    vars l and l;
    vars r_0 and r_0;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between abdominal_aorta_I_module and generic_junction_connection for
    vars v and v_abdominal_aorta_I_Nout;
    vars v_out_sum and v_abdominal_aorta_I_sum_Nout;
  enddef;
  def map between abdominal_aorta_I_module and superior_mesenteric_module for
    vars u and u_in;
  enddef;
  def map between abdominal_aorta_I_module and abdominal_aorta_II_module for
    vars u and u_in;
  enddef;
  def map between common_hepatic_module and common_hepatic for
    vars beta_g and beta_g;
    vars theta and theta;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between common_hepatic_module and K_tube_common_hepatic_module for
    vars l and l;
    vars r_0 and r_0;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between common_hepatic_module and generic_junction_connection for
    vars v and v_common_hepatic_Nout;
  enddef;
  def map between common_hepatic_module and common_hepatic_T_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between splenic_I_module and splenic_I for
    vars beta_g and beta_g;
    vars theta and theta;
    vars l and l;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars du_dt and du_dt;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between splenic_I_module and K_tube_splenic_I_module for
    vars l and l;
    vars r_0 and r_0;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between splenic_I_module and generic_junction_connection for
    vars v and v_splenic_I_Nout;
    vars v_out_sum and v_splenic_I_sum_Nout;
  enddef;
  def map between splenic_I_module and left_gastric_module for
    vars u and u_in;
  enddef;
  def map between splenic_I_module and splenic_II_module for
    vars u and u_in;
  enddef;
  def map between left_gastric_module and left_gastric for
    vars beta_g and beta_g;
    vars theta and theta;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between left_gastric_module and K_tube_left_gastric_module for
    vars l and l;
    vars r_0 and r_0;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between left_gastric_module and generic_junction_connection for
    vars v and v_left_gastric_Nout;
  enddef;
  def map between left_gastric_module and left_gastric_T_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between splenic_II_module and splenic_II for
    vars beta_g and beta_g;
    vars theta and theta;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between splenic_II_module and K_tube_splenic_II_module for
    vars l and l;
    vars r_0 and r_0;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between splenic_II_module and generic_junction_connection for
    vars v and v_splenic_II_Nout;
  enddef;
  def map between splenic_II_module and splenic_II_T_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between superior_mesenteric_module and superior_mesenteric for
    vars beta_g and beta_g;
    vars theta and theta;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between superior_mesenteric_module and K_tube_superior_mesenteric_module for
    vars l and l;
    vars r_0 and r_0;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between superior_mesenteric_module and generic_junction_connection for
    vars v and v_superior_mesenteric_Nout;
  enddef;
  def map between superior_mesenteric_module and superior_mesenteric_T_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between abdominal_aorta_II_module and abdominal_aorta_II for
    vars beta_g and beta_g;
    vars theta and theta;
    vars l and l;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars du_dt and du_dt;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between abdominal_aorta_II_module and K_tube_abdominal_aorta_II_module for
    vars l and l;
    vars r_0 and r_0;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between abdominal_aorta_II_module and generic_junction_connection for
    vars v and v_abdominal_aorta_II_Nout;
    vars v_out_sum and v_abdominal_aorta_II_sum_Nout;
  enddef;
  def map between abdominal_aorta_II_module and renal_L_module for
    vars u and u_in;
  enddef;
  def map between abdominal_aorta_II_module and abdominal_aorta_III_module for
    vars u and u_in;
  enddef;
  def map between renal_L_module and renal_L for
    vars beta_g and beta_g;
    vars theta and theta;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between renal_L_module and K_tube_renal_L_module for
    vars l and l;
    vars r_0 and r_0;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between renal_L_module and generic_junction_connection for
    vars v and v_renal_L_Nout;
  enddef;
  def map between renal_L_module and renal_L_T_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between abdominal_aorta_III_module and abdominal_aorta_III for
    vars beta_g and beta_g;
    vars theta and theta;
    vars l and l;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars du_dt and du_dt;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between abdominal_aorta_III_module and K_tube_abdominal_aorta_III_module for
    vars l and l;
    vars r_0 and r_0;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between abdominal_aorta_III_module and generic_junction_connection for
    vars v and v_abdominal_aorta_III_Nout;
    vars v_out_sum and v_abdominal_aorta_III_sum_Nout;
  enddef;
  def map between abdominal_aorta_III_module and renal_R_module for
    vars u and u_in;
  enddef;
  def map between abdominal_aorta_III_module and abdominal_aorta_IV_module for
    vars u and u_in;
  enddef;
  def map between renal_R_module and renal_R for
    vars beta_g and beta_g;
    vars theta and theta;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between renal_R_module and K_tube_renal_R_module for
    vars l and l;
    vars r_0 and r_0;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between renal_R_module and generic_junction_connection for
    vars v and v_renal_R_Nout;
  enddef;
  def map between renal_R_module and renal_R_T_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between abdominal_aorta_IV_module and abdominal_aorta_IV for
    vars beta_g and beta_g;
    vars theta and theta;
    vars l and l;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars du_dt and du_dt;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between abdominal_aorta_IV_module and K_tube_abdominal_aorta_IV_module for
    vars l and l;
    vars r_0 and r_0;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between abdominal_aorta_IV_module and generic_junction_connection for
    vars v and v_abdominal_aorta_IV_Nout;
    vars v_out_sum and v_abdominal_aorta_IV_sum_Nout;
  enddef;
  def map between abdominal_aorta_IV_module and inferior_mesenteric_module for
    vars u and u_in;
  enddef;
  def map between abdominal_aorta_IV_module and abdominal_aorta_V_module for
    vars u and u_in;
  enddef;
  def map between inferior_mesenteric_module and inferior_mesenteric for
    vars beta_g and beta_g;
    vars theta and theta;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between inferior_mesenteric_module and K_tube_inferior_mesenteric_module for
    vars l and l;
    vars r_0 and r_0;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between inferior_mesenteric_module and generic_junction_connection for
    vars v and v_inferior_mesenteric_Nout;
  enddef;
  def map between inferior_mesenteric_module and inferior_mesenteric_T_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between abdominal_aorta_V_module and abdominal_aorta_V for
    vars beta_g and beta_g;
    vars theta and theta;
    vars l and l;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars du_dt and du_dt;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between abdominal_aorta_V_module and K_tube_abdominal_aorta_V_module for
    vars l and l;
    vars r_0 and r_0;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between abdominal_aorta_V_module and generic_junction_connection for
    vars v and v_abdominal_aorta_V_Nout;
    vars v_out_sum and v_abdominal_aorta_V_sum_Nout;
  enddef;
  def map between abdominal_aorta_V_module and common_iliac_R_module for
    vars u and u_in;
  enddef;
  def map between abdominal_aorta_V_module and common_iliac_L_module for
    vars u and u_in;
  enddef;
  def map between common_iliac_R_module and common_iliac_R for
    vars beta_g and beta_g;
    vars theta and theta;
    vars l and l;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars du_dt and du_dt;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between common_iliac_R_module and K_tube_common_iliac_R_module for
    vars l and l;
    vars r_0 and r_0;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between common_iliac_R_module and generic_junction_connection for
    vars v and v_common_iliac_R_Nout;
    vars v_out_sum and v_common_iliac_R_sum_Nout;
  enddef;
  def map between common_iliac_R_module and external_iliac_R_module for
    vars u and u_in;
  enddef;
  def map between common_iliac_R_module and internal_iliac_R_module for
    vars u and u_in;
  enddef;
  def map between common_iliac_L_module and common_iliac_L for
    vars beta_g and beta_g;
    vars theta and theta;
    vars l and l;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars du_dt and du_dt;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between common_iliac_L_module and K_tube_common_iliac_L_module for
    vars l and l;
    vars r_0 and r_0;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between common_iliac_L_module and generic_junction_connection for
    vars v and v_common_iliac_L_Nout;
    vars v_out_sum and v_common_iliac_L_sum_Nout;
  enddef;
  def map between common_iliac_L_module and external_iliac_L_module for
    vars u and u_in;
  enddef;
  def map between common_iliac_L_module and internal_iliac_L_module for
    vars u and u_in;
  enddef;
  def map between external_iliac_R_module and external_iliac_R for
    vars beta_g and beta_g;
    vars theta and theta;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between external_iliac_R_module and K_tube_external_iliac_R_module for
    vars l and l;
    vars r_0 and r_0;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between external_iliac_R_module and generic_junction_connection for
    vars v and v_external_iliac_R_Nout;
  enddef;
  def map between external_iliac_R_module and femoral_R_I_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between internal_iliac_R_module and internal_iliac_R for
    vars beta_g and beta_g;
    vars theta and theta;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between internal_iliac_R_module and K_tube_internal_iliac_R_module for
    vars l and l;
    vars r_0 and r_0;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between internal_iliac_R_module and generic_junction_connection for
    vars v and v_internal_iliac_R_Nout;
  enddef;
  def map between internal_iliac_R_module and internal_iliac_R_T_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between femoral_R_I_module and femoral_R_I for
    vars beta_g and beta_g;
    vars theta and theta;
    vars l and l;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars du_dt and du_dt;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between femoral_R_I_module and K_tube_femoral_R_I_module for
    vars l and l;
    vars r_0 and r_0;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between femoral_R_I_module and profunda_femoris_R_module for
    vars u and u_in;
  enddef;
  def map between femoral_R_I_module and femoral_R_II_module for
    vars u and u_in;
  enddef;
  def map between femoral_R_I_module and generic_junction_connection for
    vars v_out_sum and v_femoral_R_I_sum_Nout;
  enddef;
  def map between profunda_femoris_R_module and profunda_femoris_R for
    vars beta_g and beta_g;
    vars theta and theta;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between profunda_femoris_R_module and K_tube_profunda_femoris_R_module for
    vars l and l;
    vars r_0 and r_0;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between profunda_femoris_R_module and generic_junction_connection for
    vars v and v_profunda_femoris_R_Nout;
  enddef;
  def map between profunda_femoris_R_module and profunda_femoris_R_T_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between femoral_R_II_module and femoral_R_II for
    vars beta_g and beta_g;
    vars theta and theta;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between femoral_R_II_module and K_tube_femoral_R_II_module for
    vars l and l;
    vars r_0 and r_0;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between femoral_R_II_module and generic_junction_connection for
    vars v and v_femoral_R_II_Nout;
  enddef;
  def map between femoral_R_II_module and popliteal_R_I_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between popliteal_R_I_module and popliteal_R_I for
    vars beta_g and beta_g;
    vars theta and theta;
    vars l and l;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars du_dt and du_dt;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between popliteal_R_I_module and K_tube_popliteal_R_I_module for
    vars l and l;
    vars r_0 and r_0;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between popliteal_R_I_module and anterior_tibial_R_module for
    vars u and u_in;
  enddef;
  def map between popliteal_R_I_module and popliteal_R_II_module for
    vars u and u_in;
  enddef;
  def map between popliteal_R_I_module and generic_junction_connection for
    vars v_out_sum and v_popliteal_R_I_sum_Nout;
  enddef;
  def map between anterior_tibial_R_module and anterior_tibial_R for
    vars beta_g and beta_g;
    vars theta and theta;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between anterior_tibial_R_module and K_tube_anterior_tibial_R_module for
    vars l and l;
    vars r_0 and r_0;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between anterior_tibial_R_module and generic_junction_connection for
    vars v and v_anterior_tibial_R_Nout;
  enddef;
  def map between anterior_tibial_R_module and anterior_tibial_R_T_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between popliteal_R_II_module and popliteal_R_II for
    vars beta_g and beta_g;
    vars theta and theta;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between popliteal_R_II_module and K_tube_popliteal_R_II_module for
    vars l and l;
    vars r_0 and r_0;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between popliteal_R_II_module and generic_junction_connection for
    vars v and v_popliteal_R_II_Nout;
  enddef;
  def map between popliteal_R_II_module and tibiofibular_trunk_R_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between tibiofibular_trunk_R_module and tibiofibular_trunk_R for
    vars beta_g and beta_g;
    vars theta and theta;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between tibiofibular_trunk_R_module and K_tube_tibiofibular_trunk_R_module for
    vars l and l;
    vars r_0 and r_0;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between tibiofibular_trunk_R_module and posterior_tibial_R_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between posterior_tibial_R_module and posterior_tibial_R for
    vars beta_g and beta_g;
    vars theta and theta;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between posterior_tibial_R_module and K_tube_posterior_tibial_R_module for
    vars l and l;
    vars r_0 and r_0;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between posterior_tibial_R_module and posterior_tibial_R_T_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between external_iliac_L_module and external_iliac_L for
    vars beta_g and beta_g;
    vars theta and theta;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between external_iliac_L_module and K_tube_external_iliac_L_module for
    vars l and l;
    vars r_0 and r_0;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between external_iliac_L_module and generic_junction_connection for
    vars v and v_external_iliac_L_Nout;
  enddef;
  def map between external_iliac_L_module and femoral_L_I_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between internal_iliac_L_module and internal_iliac_L for
    vars beta_g and beta_g;
    vars theta and theta;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between internal_iliac_L_module and K_tube_internal_iliac_L_module for
    vars l and l;
    vars r_0 and r_0;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between internal_iliac_L_module and generic_junction_connection for
    vars v and v_internal_iliac_L_Nout;
  enddef;
  def map between internal_iliac_L_module and internal_iliac_L_T_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between femoral_L_I_module and femoral_L_I for
    vars beta_g and beta_g;
    vars theta and theta;
    vars l and l;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars du_dt and du_dt;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between femoral_L_I_module and K_tube_femoral_L_I_module for
    vars l and l;
    vars r_0 and r_0;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between femoral_L_I_module and profunda_femoris_L_module for
    vars u and u_in;
  enddef;
  def map between femoral_L_I_module and femoral_L_II_module for
    vars u and u_in;
  enddef;
  def map between femoral_L_I_module and generic_junction_connection for
    vars v_out_sum and v_femoral_L_I_sum_Nout;
  enddef;
  def map between profunda_femoris_L_module and profunda_femoris_L for
    vars beta_g and beta_g;
    vars theta and theta;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between profunda_femoris_L_module and K_tube_profunda_femoris_L_module for
    vars l and l;
    vars r_0 and r_0;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between profunda_femoris_L_module and generic_junction_connection for
    vars v and v_profunda_femoris_L_Nout;
  enddef;
  def map between profunda_femoris_L_module and profunda_femoris_L_T_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between femoral_L_II_module and femoral_L_II for
    vars beta_g and beta_g;
    vars theta and theta;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between femoral_L_II_module and K_tube_femoral_L_II_module for
    vars l and l;
    vars r_0 and r_0;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between femoral_L_II_module and generic_junction_connection for
    vars v and v_femoral_L_II_Nout;
  enddef;
  def map between femoral_L_II_module and popliteal_L_I_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between popliteal_L_I_module and popliteal_L_I for
    vars beta_g and beta_g;
    vars theta and theta;
    vars l and l;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars du_dt and du_dt;
    vars q_C and q_C;
    vars q_0 and q_0;
    vars q and q;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between popliteal_L_I_module and K_tube_popliteal_L_I_module for
    vars l and l;
    vars r_0 and r_0;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between popliteal_L_I_module and anterior_tibial_L_module for
    vars u and u_in;
  enddef;
  def map between popliteal_L_I_module and popliteal_L_II_module for
    vars u and u_in;
  enddef;
  def map between popliteal_L_I_module and generic_junction_connection for
    vars v_out_sum and v_popliteal_L_I_sum_Nout;
  enddef;
  def map between anterior_tibial_L_module and anterior_tibial_L for
    vars beta_g and beta_g;
    vars theta and theta;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between anterior_tibial_L_module and K_tube_anterior_tibial_L_module for
    vars l and l;
    vars r_0 and r_0;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between anterior_tibial_L_module and generic_junction_connection for
    vars v and v_anterior_tibial_L_Nout;
  enddef;
  def map between anterior_tibial_L_module and anterior_tibial_L_T_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between popliteal_L_II_module and popliteal_L_II for
    vars beta_g and beta_g;
    vars theta and theta;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between popliteal_L_II_module and K_tube_popliteal_L_II_module for
    vars l and l;
    vars r_0 and r_0;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between popliteal_L_II_module and generic_junction_connection for
    vars v and v_popliteal_L_II_Nout;
  enddef;
  def map between popliteal_L_II_module and tibiofibular_trunk_L_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between tibiofibular_trunk_L_module and tibiofibular_trunk_L for
    vars beta_g and beta_g;
    vars theta and theta;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between tibiofibular_trunk_L_module and K_tube_tibiofibular_trunk_L_module for
    vars l and l;
    vars r_0 and r_0;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between tibiofibular_trunk_L_module and posterior_tibial_L_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between posterior_tibial_L_module and posterior_tibial_L for
    vars beta_g and beta_g;
    vars theta and theta;
    vars r and r;
    vars r_0 and r_0;
    vars u_0 and u_0;
    vars m_tube and m_tube;
    vars n_tube and n_tube;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars q_C and q_C;
    vars q and q;
    vars q_0 and q_0;
    vars R_flag and R_flag;
    vars I_scale and I_scale;
  enddef;
  def map between posterior_tibial_L_module and K_tube_posterior_tibial_L_module for
    vars l and l;
    vars r_0 and r_0;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between posterior_tibial_L_module and posterior_tibial_L_T_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between external_carotid_R_T_module and external_carotid_R_T for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars v_T and v_T;
    vars u_out and u_out;
    vars q_us and q_us;
    vars q_init and q_init;
    vars q and q;
  enddef;
  def map between external_carotid_R_T_module and terminal_venous_connection for
    vars v_T and v_external_carotid_R_T;
  enddef;
  def map between internal_carotid_R_T_module and internal_carotid_R_T for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars v_T and v_T;
    vars u_out and u_out;
    vars q_us and q_us;
    vars q_init and q_init;
    vars q and q;
  enddef;
  def map between internal_carotid_R_T_module and terminal_venous_connection for
    vars v_T and v_internal_carotid_R_T;
  enddef;
  def map between vertebral_R_T_module and vertebral_R_T for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars v_T and v_T;
    vars u_out and u_out;
    vars q_us and q_us;
    vars q_init and q_init;
    vars q and q;
  enddef;
  def map between vertebral_R_T_module and terminal_venous_connection for
    vars v_T and v_vertebral_R_T;
  enddef;
  def map between radial_R_T_module and radial_R_T for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars v_T and v_T;
    vars u_out and u_out;
    vars q_us and q_us;
    vars q_init and q_init;
    vars q and q;
  enddef;
  def map between radial_R_T_module and terminal_venous_connection for
    vars v_T and v_radial_R_T;
  enddef;
  def map between posterior_interosseous_R_T_module and posterior_interosseous_R_T for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars v_T and v_T;
    vars u_out and u_out;
    vars q_us and q_us;
    vars q_init and q_init;
    vars q and q;
  enddef;
  def map between posterior_interosseous_R_T_module and terminal_venous_connection for
    vars v_T and v_posterior_interosseous_R_T;
  enddef;
  def map between ulnar_R_II_T_module and ulnar_R_II_T for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars v_T and v_T;
    vars u_out and u_out;
    vars q_us and q_us;
    vars q_init and q_init;
    vars q and q;
  enddef;
  def map between ulnar_R_II_T_module and terminal_venous_connection for
    vars v_T and v_ulnar_R_II_T;
  enddef;
  def map between external_carotid_L_T_module and external_carotid_L_T for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars v_T and v_T;
    vars u_out and u_out;
    vars q_us and q_us;
    vars q_init and q_init;
    vars q and q;
  enddef;
  def map between external_carotid_L_T_module and terminal_venous_connection for
    vars v_T and v_external_carotid_L_T;
  enddef;
  def map between internal_carotid_L_T_module and internal_carotid_L_T for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars v_T and v_T;
    vars u_out and u_out;
    vars q_us and q_us;
    vars q_init and q_init;
    vars q and q;
  enddef;
  def map between internal_carotid_L_T_module and terminal_venous_connection for
    vars v_T and v_internal_carotid_L_T;
  enddef;
  def map between vertebral_L_T_module and vertebral_L_T for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars v_T and v_T;
    vars u_out and u_out;
    vars q_us and q_us;
    vars q_init and q_init;
    vars q and q;
  enddef;
  def map between vertebral_L_T_module and terminal_venous_connection for
    vars v_T and v_vertebral_L_T;
  enddef;
  def map between radial_L_T_module and radial_L_T for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars v_T and v_T;
    vars u_out and u_out;
    vars q_us and q_us;
    vars q_init and q_init;
    vars q and q;
  enddef;
  def map between radial_L_T_module and terminal_venous_connection for
    vars v_T and v_radial_L_T;
  enddef;
  def map between posterior_interosseous_L_T_module and posterior_interosseous_L_T for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars v_T and v_T;
    vars u_out and u_out;
    vars q_us and q_us;
    vars q_init and q_init;
    vars q and q;
  enddef;
  def map between posterior_interosseous_L_T_module and terminal_venous_connection for
    vars v_T and v_posterior_interosseous_L_T;
  enddef;
  def map between ulnar_L_II_T_module and ulnar_L_II_T for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars v_T and v_T;
    vars u_out and u_out;
    vars q_us and q_us;
    vars q_init and q_init;
    vars q and q;
  enddef;
  def map between ulnar_L_II_T_module and terminal_venous_connection for
    vars v_T and v_ulnar_L_II_T;
  enddef;
  def map between posterior_intercostal_T6_R_T_module and posterior_intercostal_T6_R_T for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars v_T and v_T;
    vars u_out and u_out;
    vars q_us and q_us;
    vars q_init and q_init;
    vars q and q;
  enddef;
  def map between posterior_intercostal_T6_R_T_module and terminal_venous_connection for
    vars v_T and v_posterior_intercostal_T6_R_T;
  enddef;
  def map between posterior_intercostal_T6_L_T_module and posterior_intercostal_T6_L_T for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars v_T and v_T;
    vars u_out and u_out;
    vars q_us and q_us;
    vars q_init and q_init;
    vars q and q;
  enddef;
  def map between posterior_intercostal_T6_L_T_module and terminal_venous_connection for
    vars v_T and v_posterior_intercostal_T6_L_T;
  enddef;
  def map between posterior_intercostal_T7_R_T_module and posterior_intercostal_T7_R_T for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars v_T and v_T;
    vars u_out and u_out;
    vars q_us and q_us;
    vars q_init and q_init;
    vars q and q;
  enddef;
  def map between posterior_intercostal_T7_R_T_module and terminal_venous_connection for
    vars v_T and v_posterior_intercostal_T7_R_T;
  enddef;
  def map between posterior_intercostal_T7_L_T_module and posterior_intercostal_T7_L_T for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars v_T and v_T;
    vars u_out and u_out;
    vars q_us and q_us;
    vars q_init and q_init;
    vars q and q;
  enddef;
  def map between posterior_intercostal_T7_L_T_module and terminal_venous_connection for
    vars v_T and v_posterior_intercostal_T7_L_T;
  enddef;
  def map between common_hepatic_T_module and common_hepatic_T for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars v_T and v_T;
    vars u_out and u_out;
    vars q_us and q_us;
    vars q_init and q_init;
    vars q and q;
  enddef;
  def map between common_hepatic_T_module and terminal_venous_connection for
    vars v_T and v_common_hepatic_T;
  enddef;
  def map between left_gastric_T_module and left_gastric_T for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars v_T and v_T;
    vars u_out and u_out;
    vars q_us and q_us;
    vars q_init and q_init;
    vars q and q;
  enddef;
  def map between left_gastric_T_module and terminal_venous_connection for
    vars v_T and v_left_gastric_T;
  enddef;
  def map between splenic_II_T_module and splenic_II_T for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars v_T and v_T;
    vars u_out and u_out;
    vars q_us and q_us;
    vars q_init and q_init;
    vars q and q;
  enddef;
  def map between splenic_II_T_module and terminal_venous_connection for
    vars v_T and v_splenic_II_T;
  enddef;
  def map between superior_mesenteric_T_module and superior_mesenteric_T for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars v_T and v_T;
    vars u_out and u_out;
    vars q_us and q_us;
    vars q_init and q_init;
    vars q and q;
  enddef;
  def map between superior_mesenteric_T_module and terminal_venous_connection for
    vars v_T and v_superior_mesenteric_T;
  enddef;
  def map between renal_L_T_module and renal_L_T for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars v_T and v_T;
    vars u_out and u_out;
    vars q_us and q_us;
    vars q_init and q_init;
    vars q and q;
  enddef;
  def map between renal_L_T_module and terminal_venous_connection for
    vars v_T and v_renal_L_T;
  enddef;
  def map between renal_R_T_module and renal_R_T for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars v_T and v_T;
    vars u_out and u_out;
    vars q_us and q_us;
    vars q_init and q_init;
    vars q and q;
  enddef;
  def map between renal_R_T_module and terminal_venous_connection for
    vars v_T and v_renal_R_T;
  enddef;
  def map between inferior_mesenteric_T_module and inferior_mesenteric_T for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars v_T and v_T;
    vars u_out and u_out;
    vars q_us and q_us;
    vars q_init and q_init;
    vars q and q;
  enddef;
  def map between inferior_mesenteric_T_module and terminal_venous_connection for
    vars v_T and v_inferior_mesenteric_T;
  enddef;
  def map between internal_iliac_R_T_module and internal_iliac_R_T for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars v_T and v_T;
    vars u_out and u_out;
    vars q_us and q_us;
    vars q_init and q_init;
    vars q and q;
  enddef;
  def map between internal_iliac_R_T_module and terminal_venous_connection for
    vars v_T and v_internal_iliac_R_T;
  enddef;
  def map between profunda_femoris_R_T_module and profunda_femoris_R_T for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars v_T and v_T;
    vars u_out and u_out;
    vars q_us and q_us;
    vars q_init and q_init;
    vars q and q;
  enddef;
  def map between profunda_femoris_R_T_module and terminal_venous_connection for
    vars v_T and v_profunda_femoris_R_T;
  enddef;
  def map between anterior_tibial_R_T_module and anterior_tibial_R_T for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars v_T and v_T;
    vars u_out and u_out;
    vars q_us and q_us;
    vars q_init and q_init;
    vars q and q;
  enddef;
  def map between anterior_tibial_R_T_module and terminal_venous_connection for
    vars v_T and v_anterior_tibial_R_T;
  enddef;
  def map between posterior_tibial_R_T_module and posterior_tibial_R_T for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars v_T and v_T;
    vars u_out and u_out;
    vars q_us and q_us;
    vars q_init and q_init;
    vars q and q;
  enddef;
  def map between posterior_tibial_R_T_module and terminal_venous_connection for
    vars v_T and v_posterior_tibial_R_T;
  enddef;
  def map between internal_iliac_L_T_module and internal_iliac_L_T for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars v_T and v_T;
    vars u_out and u_out;
    vars q_us and q_us;
    vars q_init and q_init;
    vars q and q;
  enddef;
  def map between internal_iliac_L_T_module and terminal_venous_connection for
    vars v_T and v_internal_iliac_L_T;
  enddef;
  def map between profunda_femoris_L_T_module and profunda_femoris_L_T for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars v_T and v_T;
    vars u_out and u_out;
    vars q_us and q_us;
    vars q_init and q_init;
    vars q and q;
  enddef;
  def map between profunda_femoris_L_T_module and terminal_venous_connection for
    vars v_T and v_profunda_femoris_L_T;
  enddef;
  def map between anterior_tibial_L_T_module and anterior_tibial_L_T for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars v_T and v_T;
    vars u_out and u_out;
    vars q_us and q_us;
    vars q_init and q_init;
    vars q and q;
  enddef;
  def map between anterior_tibial_L_T_module and terminal_venous_connection for
    vars v_T and v_anterior_tibial_L_T;
  enddef;
  def map between posterior_tibial_L_T_module and posterior_tibial_L_T for
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars u_C and u_C;
    vars v_T and v_T;
    vars u_out and u_out;
    vars q_us and q_us;
    vars q_init and q_init;
    vars q and q;
  enddef;
  def map between posterior_tibial_L_T_module and terminal_venous_connection for
    vars v_T and v_posterior_tibial_L_T;
  enddef;
  def map between K_tube_aortic_arch_I_module and K_tube_aortic_arch_I for
    vars E and E;
    vars K_m and K_m;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between K_tube_brachiocephalic_trunk_module and K_tube_brachiocephalic_trunk for
    vars E and E;
    vars K_m and K_m;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between K_tube_aortic_arch_II_module and K_tube_aortic_arch_II for
    vars E and E;
    vars K_m and K_m;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between K_tube_subclavian_R_I_module and K_tube_subclavian_R_I for
    vars E and E;
    vars K_m and K_m;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between K_tube_common_carotid_R_module and K_tube_common_carotid_R for
    vars E and E;
    vars K_m and K_m;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between K_tube_vertebral_R_module and K_tube_vertebral_R for
    vars E and E;
    vars K_m and K_m;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between K_tube_subclavian_R_II_module and K_tube_subclavian_R_II for
    vars E and E;
    vars K_m and K_m;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between K_tube_axillary_R_module and K_tube_axillary_R for
    vars E and E;
    vars K_m and K_m;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between K_tube_brachial_R_module and K_tube_brachial_R for
    vars E and E;
    vars K_m and K_m;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between K_tube_radial_R_module and K_tube_radial_R for
    vars E and E;
    vars K_m and K_m;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between K_tube_ulnar_R_I_module and K_tube_ulnar_R_I for
    vars E and E;
    vars K_m and K_m;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between K_tube_common_interosseous_R_module and K_tube_common_interosseous_R for
    vars E and E;
    vars K_m and K_m;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between K_tube_ulnar_R_II_module and K_tube_ulnar_R_II for
    vars E and E;
    vars K_m and K_m;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between K_tube_posterior_interosseous_R_module and K_tube_posterior_interosseous_R for
    vars E and E;
    vars K_m and K_m;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between K_tube_external_carotid_R_module and K_tube_external_carotid_R for
    vars E and E;
    vars K_m and K_m;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between K_tube_internal_carotid_R_module and K_tube_internal_carotid_R for
    vars E and E;
    vars K_m and K_m;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between K_tube_common_carotid_L_module and K_tube_common_carotid_L for
    vars E and E;
    vars K_m and K_m;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between K_tube_aortic_arch_III_module and K_tube_aortic_arch_III for
    vars E and E;
    vars K_m and K_m;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between K_tube_external_carotid_L_module and K_tube_external_carotid_L for
    vars E and E;
    vars K_m and K_m;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between K_tube_internal_carotid_L_module and K_tube_internal_carotid_L for
    vars E and E;
    vars K_m and K_m;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between K_tube_subclavian_L_I_module and K_tube_subclavian_L_I for
    vars E and E;
    vars K_m and K_m;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between K_tube_aortic_arch_IV_module and K_tube_aortic_arch_IV for
    vars E and E;
    vars K_m and K_m;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between K_tube_vertebral_L_module and K_tube_vertebral_L for
    vars E and E;
    vars K_m and K_m;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between K_tube_subclavian_L_II_module and K_tube_subclavian_L_II for
    vars E and E;
    vars K_m and K_m;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between K_tube_axillary_L_module and K_tube_axillary_L for
    vars E and E;
    vars K_m and K_m;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between K_tube_brachial_L_module and K_tube_brachial_L for
    vars E and E;
    vars K_m and K_m;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between K_tube_radial_L_module and K_tube_radial_L for
    vars E and E;
    vars K_m and K_m;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between K_tube_ulnar_L_I_module and K_tube_ulnar_L_I for
    vars E and E;
    vars K_m and K_m;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between K_tube_common_interosseous_L_module and K_tube_common_interosseous_L for
    vars E and E;
    vars K_m and K_m;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between K_tube_ulnar_L_II_module and K_tube_ulnar_L_II for
    vars E and E;
    vars K_m and K_m;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between K_tube_posterior_interosseous_L_module and K_tube_posterior_interosseous_L for
    vars E and E;
    vars K_m and K_m;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between K_tube_thoracic_aorta_I_module and K_tube_thoracic_aorta_I for
    vars E and E;
    vars K_m and K_m;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between K_tube_posterior_intercostal_T6_R_module and K_tube_posterior_intercostal_T6_R for
    vars E and E;
    vars K_m and K_m;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between K_tube_thoracic_aorta_II_module and K_tube_thoracic_aorta_II for
    vars E and E;
    vars K_m and K_m;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between K_tube_posterior_intercostal_T6_L_module and K_tube_posterior_intercostal_T6_L for
    vars E and E;
    vars K_m and K_m;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between K_tube_thoracic_aorta_III_module and K_tube_thoracic_aorta_III for
    vars E and E;
    vars K_m and K_m;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between K_tube_posterior_intercostal_T7_R_module and K_tube_posterior_intercostal_T7_R for
    vars E and E;
    vars K_m and K_m;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between K_tube_thoracic_aorta_IV_module and K_tube_thoracic_aorta_IV for
    vars E and E;
    vars K_m and K_m;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between K_tube_posterior_intercostal_T7_L_module and K_tube_posterior_intercostal_T7_L for
    vars E and E;
    vars K_m and K_m;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between K_tube_thoracic_aorta_V_module and K_tube_thoracic_aorta_V for
    vars E and E;
    vars K_m and K_m;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between K_tube_thoracic_aorta_VI_module and K_tube_thoracic_aorta_VI for
    vars E and E;
    vars K_m and K_m;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between K_tube_celiac_trunk_module and K_tube_celiac_trunk for
    vars E and E;
    vars K_m and K_m;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between K_tube_abdominal_aorta_I_module and K_tube_abdominal_aorta_I for
    vars E and E;
    vars K_m and K_m;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between K_tube_common_hepatic_module and K_tube_common_hepatic for
    vars E and E;
    vars K_m and K_m;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between K_tube_splenic_I_module and K_tube_splenic_I for
    vars E and E;
    vars K_m and K_m;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between K_tube_left_gastric_module and K_tube_left_gastric for
    vars E and E;
    vars K_m and K_m;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between K_tube_splenic_II_module and K_tube_splenic_II for
    vars E and E;
    vars K_m and K_m;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between K_tube_superior_mesenteric_module and K_tube_superior_mesenteric for
    vars E and E;
    vars K_m and K_m;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between K_tube_abdominal_aorta_II_module and K_tube_abdominal_aorta_II for
    vars E and E;
    vars K_m and K_m;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between K_tube_renal_L_module and K_tube_renal_L for
    vars E and E;
    vars K_m and K_m;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between K_tube_abdominal_aorta_III_module and K_tube_abdominal_aorta_III for
    vars E and E;
    vars K_m and K_m;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between K_tube_renal_R_module and K_tube_renal_R for
    vars E and E;
    vars K_m and K_m;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between K_tube_abdominal_aorta_IV_module and K_tube_abdominal_aorta_IV for
    vars E and E;
    vars K_m and K_m;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between K_tube_inferior_mesenteric_module and K_tube_inferior_mesenteric for
    vars E and E;
    vars K_m and K_m;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between K_tube_abdominal_aorta_V_module and K_tube_abdominal_aorta_V for
    vars E and E;
    vars K_m and K_m;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between K_tube_common_iliac_R_module and K_tube_common_iliac_R for
    vars E and E;
    vars K_m and K_m;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between K_tube_common_iliac_L_module and K_tube_common_iliac_L for
    vars E and E;
    vars K_m and K_m;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between K_tube_external_iliac_R_module and K_tube_external_iliac_R for
    vars E and E;
    vars K_m and K_m;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between K_tube_internal_iliac_R_module and K_tube_internal_iliac_R for
    vars E and E;
    vars K_m and K_m;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between K_tube_femoral_R_I_module and K_tube_femoral_R_I for
    vars E and E;
    vars K_m and K_m;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between K_tube_profunda_femoris_R_module and K_tube_profunda_femoris_R for
    vars E and E;
    vars K_m and K_m;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between K_tube_femoral_R_II_module and K_tube_femoral_R_II for
    vars E and E;
    vars K_m and K_m;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between K_tube_popliteal_R_I_module and K_tube_popliteal_R_I for
    vars E and E;
    vars K_m and K_m;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between K_tube_anterior_tibial_R_module and K_tube_anterior_tibial_R for
    vars E and E;
    vars K_m and K_m;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between K_tube_popliteal_R_II_module and K_tube_popliteal_R_II for
    vars E and E;
    vars K_m and K_m;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between K_tube_tibiofibular_trunk_R_module and K_tube_tibiofibular_trunk_R for
    vars E and E;
    vars K_m and K_m;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between K_tube_posterior_tibial_R_module and K_tube_posterior_tibial_R for
    vars E and E;
    vars K_m and K_m;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between K_tube_external_iliac_L_module and K_tube_external_iliac_L for
    vars E and E;
    vars K_m and K_m;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between K_tube_internal_iliac_L_module and K_tube_internal_iliac_L for
    vars E and E;
    vars K_m and K_m;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between K_tube_femoral_L_I_module and K_tube_femoral_L_I for
    vars E and E;
    vars K_m and K_m;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between K_tube_profunda_femoris_L_module and K_tube_profunda_femoris_L for
    vars E and E;
    vars K_m and K_m;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between K_tube_femoral_L_II_module and K_tube_femoral_L_II for
    vars E and E;
    vars K_m and K_m;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between K_tube_popliteal_L_I_module and K_tube_popliteal_L_I for
    vars E and E;
    vars K_m and K_m;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between K_tube_anterior_tibial_L_module and K_tube_anterior_tibial_L for
    vars E and E;
    vars K_m and K_m;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between K_tube_popliteal_L_II_module and K_tube_popliteal_L_II for
    vars E and E;
    vars K_m and K_m;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between K_tube_tibiofibular_trunk_L_module and K_tube_tibiofibular_trunk_L for
    vars E and E;
    vars K_m and K_m;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
  def map between K_tube_posterior_tibial_L_module and K_tube_posterior_tibial_L for
    vars E and E;
    vars K_m and K_m;
    vars K_tube and K_tube;
    vars K_tube_visco and K_tube_visco;
  enddef;
enddef;
